;adeq1netgp
;avance-version (20/03/03)
;1,1-ADEQUATE: 2D-HSQC-nJ(CC)-ADEQUATE
;                 using sensitivity improvement
;phase sensitive using Echo/Antiecho gradient selection
;with decoupling during acquisition
;
;B. Reif, M. Koeck, R. Kerssebaum, H. Kang, W. Fenical & C. Griesinger
;   J. Magn. Reson. A118, 282-285 (1996).
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"
"d0=3u"
"p4=p3*2"
"d11=30m"

"p0=p3*0.667"
"d4=1s/(cnst2*4)"
"d23=1s/(cnst3*4)"
"d24=1s/(cnst2*cnst11)"


"in0=inf1/2"


"DELTA1=p16+d16-p2-d0*2+3u"
"DELTA2=p16+d16+6u"
"DELTA3=d23-3u-p16-d16"


1 ze
  d11 pl12:f2
2 d1 do:f2
3 (p1 ph1)
  d4 pl2:f2
  (center (p2 ph12) (p4 ph12):f2 )
  d4 

#   ifdef TRIMP
  (p28 ph1)
#   endif /* TRIMP */

  (p1 ph2) (p3 ph4):f2
  d23
  (p4 ph8):f2
  d23
  (p3 ph9):f2
  d0
  (p2 ph1)
  d0
  DELTA1 UNBLKGRAD
  (p4 ph11):f2
  3u
  p16:gp1
  d16
  (p0 ph10):f2
  3u
  p16:gp2
  d16
  DELTA3
  (p4 ph11):f2
  d23
  (center (p1 ph1) (p3 ph5):f2 )
  d24
  (center (p2 ph1) (p4 ph1):f2 )
  d24
  (center (p1 ph2) (p3 ph6):f2 )
  d4
  (center (p2 ph1) (p4 ph1):f2 )
  d4
  (p1 ph1)
  DELTA2
  (p2 ph1)
  3u
  p16:gp3*EA
  d16 pl12:f2 
  3u BLKGRAD
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 F1EA(calgrad(EA) & calph(ph6, +180), caldel(d0, +in0))
exit
   

ph1=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph2=1
ph4=0 2
ph5=0 0 2 2 	
ph6=1 1 3 3
ph7=0
ph8=0
ph9=0 0 0 0 2 2 2 2
ph10=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph11=0
ph12=0
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p0 : f2 channel -  60 degree high power pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse
;p28: f1 channel - trim pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/4J(CH)
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d23: 1/(4J(CC))
;d24: 1/(4J)CH for CH
;     1/(6J)CH for all multiplicities
;cnst2 : J(CH) = 127 .. 160 Hz
;cnst3 : J(CC) = ~11 Hz longrange
;cnst11: for multiplicity selection = 4 for CH, 6 for CHn
;inf1: 1/SW(C-DQ) = 2 * DW(C-DQ)
;in0: 1/(2 * SW(C-DQ)) = DW(C-DQ)
;nd0: 2
;ns: 32 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: -78.5%
;gpz2: -77.6%
;gpz3: -59%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;Processing

;F1 reverse: true



;$Id:$
