;adeqn1etgpsp
;avance-version (15/03/31)
;n,1-ADEQUATE: 2D-HMBC-1J(CC)-ADEQUATE
;phase sensitive using Echo/Antiecho gradient selection
;using shaped pulses for 180degree pulses on f2 - channel
;
;B. Reif, M. Koeck, R. Kerssebaum, H. Kang, W. Fenical & C. Griesinger
;   J. Magn. Reson. A118, 282-285 (1996).
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl> 
#include <Delay.incl>
#include <Grad.incl>


"cnst29=1 / ((-sfo2*2/sfo1) - 1)"
"cnst30=(1 - (sfo2*2/sfo1))"

define list<gradient> EA1 = { -1.000 cnst29 }
define list<gradient> EA2 = { cnst30 1.000 }


"p2=p1*2"
"d11=30m"
"d2=1s/(cnst2*2)"
"d6=1s/(cnst13*2)"
"d23=1s/(cnst3*4)"

"p0=p3*0.667"


"d0=3u"

"in0=inf1/2"


"DELTA2=d23-p24/2-4u"
"DELTA3=p16+d16+p2+d0*2-4u"


1 ze
2 d11
3 d1 pl1:f1 pl2:f2
  
  (p1 ph1)
  d2
  (p3 ph8):f2
  d6

  (p3 ph3):f2
  4u
  DELTA2
  (p24:sp7 ph4):f2
  4u
  DELTA2 pl2:f2 UNBLKGRAD
  (p3 ph5):f2

  d0
  (p2 ph1)
  d0
  p16:gp1*EA1
  d16
  (p24:sp7 ph1):f2
  4u
  DELTA3 pl2:f2

  (p0 ph6):f2
  4u
  DELTA2
  (p24:sp7 ph1):f2
  4u
  DELTA2 pl2:f2
  (p3 ph7):f2
  4u
  p16:gp1*EA2
  d16
  4u BLKGRAD
  go=2 ph31
  d11 mc #0 to 2
     F1EA(calgrad(EA1) & calgrad(EA2), caldel(d0, +in0) & calph(ph3, +180) & calph(ph4, +180) & calph(ph5, +180) & calph(ph8, +180))
exit

   
ph1=0
ph3=0 2
ph4=0
ph5=0 0 2 2 	
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph7=0 0 0 0 2 2 2 2
ph8=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;sp7: f2 channel - shaped pulse (180degree refocussing)
;spnam7: Crp60comp.4
;p0 : f2 channel -  60 degree high power pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;p24: f2 channel - 180 degree shaped pulse for refocussing
;     = 2msec for Crp60comp.4
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/2J(CH)
;d6 : delay for evolution of long range CH couplings
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d23: 1/(4J(CC))
;cnst2 : J(CH) = 127 .. 160 Hz
;cnst3 : J(CC) = 35 .. 55 Hz
;cnst13: = J(XH) long range
;inf1: 1/SW(C-DQ) = 2 * DW(C-DQ)
;in0: 1/(2 * SW(C-DQ)) = DW(C-DQ)
;nd0: 2
;ns: 64 * n
;ds: 32
;td1: number of experiments
;FnMODE: echo-antiecho


;for z-only gradients:
;gpz1: 90%

;use gradient files:
;gpnam1: SMSQ10.100



;$Id:$
