;adeqnnetgp
;avance-version (12/01/11)
;n,n-ADEQUATE: 2D-HMBC-nJ(CC)-ADEQUATE
;phase sensitive using Echo/Antiecho gradient selection
;
;B. Reif, M. Koeck, R. Kerssebaum, H. Kang, W. Fenical & C. Griesinger
;   J. Magn. Reson. A118, 282-285 (1996).
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


define list<gradient> EA1 = { -0.66519 -0.99778}
define list<gradient> EA2 = { 1.00000 0.49667}


#include <Avance.incl> 
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"
"d0=3u"
"p4=p3*2"
"d11=30m"

"p0=p3*0.667"
"d2=1s/(cnst2*2)"
"d6=1s/(cnst13*2)"
"d23=1s/(cnst3*4)"


"in0=inf1/2"


"DELTA1=p16+d16-p2-d0*2+3u"


1 ze
2 d1
3 (p1 ph1)
  d2
  (p3 ph14):f2
  d6
  (p3 ph4):f2
  d23
  (p4 ph8):f2
  d23
  (p3 ph9):f2
  DELTA1
  d0 UNBLKGRAD
  (p2 ph12)
  d0
  (p4 ph11):f2
  3u
  p16:gp1*EA1
  d16
  (p0 ph10):f2
  d23
  (p4 ph11):f2
  d23
  (p3 ph5):f2
  100u
  p16:gp1*EA2
  d16
  3u BLKGRAD
  go=2 ph31
  d1 mc #0 to 2
     F1EA(calgrad(EA1) & calgrad(EA2), caldel(d0, +in0) & calph(ph4, +180) & calph(ph8, +180) & calph(ph9, +180) & calph(ph14, +180))
exit

   
ph1=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph4=0 2
ph5=0 0 2 2 	
ph8=0
ph9=0 0 0 0 2 2 2 2
ph10=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph11=0
ph12=0 
ph14=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;p0 : f2 channel -  60 degree high power pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/2J(CH)
;d6 : delay for evolution of long range CH couplings
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d23: 1/(4J(CC))
;cnst2 : J(CH) = 127 .. 160 Hz
;cnst3 : J(CC) = ~11 Hz longrange
;cnst13: = J(XH) long range
;inf1: 1/SW(C) = 2 * DW(C)
;in0: 1/(2 * SW(C)) = DW(C)
;nd0: 2
;ns: 64 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho


;use gradient ratio:   -60 :    +90.2   for p(13C)=-2 (1st incr.)
;                      -90 :    +44.8   for p(13C)=+2 (2nd incr.)

;for z-only gradients:
;gpz1: 90%

;use gradient files:
;gpnam1: SMSQ10.100



;$Id:$
