;apt
;avance-version (02/05/31)
;attached proton test
;
;S.L. Patt & J.N. Shoolery, J. Magn. Reson. 46, 535-539 (1982)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d11=30m"
"d20=1s/(cnst2*cnst11)"


1 ze
  d11 pl12:f2 
  d11 cpd2:f2
2 30m
  d1
  4u do:f2
  p0 ph1
  d20
  p2 ph2 
  d20 cpd2:f2
  d21
  p2 ph3
  d21
  go=2 ph31
  30m mc #0 to 2 F0(zd)
  d11 do:f2
exit


ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph2=0 1 2 3 1 2 3 0 2 3 0 1 3 0 1 2
ph3=0 1 1 0 1 0 0 1 1 0 0 1 0 1 1 0
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p0 : f1 channel - for any flip angle
;p2 : f1 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                           [30 msec]
;d20: 1/(J(XH))  X, XH2 positive, XH, XH3 negative
;     1/(2J(XH)) X only
;d21: delay for second echo                        [100 usec to 1msec]
;cnst2: = J(XH)
;cnst11: = 1  X, XH2 positive, XH, XH3 negative
;          2  X only
;ns : 4 * n, total number of scans: NS * TD0
;ds : 8
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
