;aptjc
;avance-version (02/05/31)
;attached proton test with J-compensation
;
;S.L. Patt & J.N. Shoolery, J. Magn. Reson. 46, 535-539 (1982)
;A.M. Torres, T.T. Nakashima & R.E.D. McClung, J. Magn. Reson. A101,
;   285-294 (1993)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"p4=p3*2"
"d2=1s/(cnst2*2)"
"d4=1s/(cnst2*4)"
"d11=30m"


1 ze
  d11 pl12:f2 
  d11 cpd2:f2
2 30m
  d1
  4u do:f2
  p0 ph1
  d2 pl2:f2
  (p3 ph6):f2
  d4
  (center (p2 ph2) (p4 ph3):f2 )
  d4
  (p3 ph7):f2
  d2 pl12:f2
  p2 ph4
  go=2 ph31 cpd2:f2
  30m mc #0 to 2 F0(zd)
  d11 do:f2
exit


ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph2=0 1 2 3 1 2 3 0 2 3 0 1 3 0 1 2
ph3=0
ph4=0 1 1 0 1 0 0 1 1 0 0 1 0 1 1 0
ph6=0
ph7=2
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p0 : f1 channel - for any flip angle
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d4 : 1/(4J(XH))
;d11: delay for disk I/O                           [30 msec]
;cnst2: = J(XH)
;ns : 4 * n, total number of scans: NS * TD0
;ds : 8
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
