;b_hsqcetf3gpsi
;avance-version (21/09/15)
;(best)-HSQC
;2D H-1/X correlation via double inept transfer
;   using sensitivity improvement
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using f3 - channel
;with gradients in back-inept
;(use parameterset B_HSQCETF3GPSI)
;
;(A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance, J. Magn.
;   Reson. 93, 151-170 (1991) )
;(L.E. Kay, P. Keifer & T. Saarinen, J. Am. Chem. Soc. 114,
;   10663-5 (1992) )
;(J. Schleucher, M. Schwendinger, M. Sattler, P. Schmidt,
;   O. Schedletzky, S.J. Glaser, O.W. Sorensen & C. Griesinger, 
;   J. Biomol. NMR 4, 301-306 (1994) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p22=p21*2"
"d11=30m"
"d26=1s/(cnst4*4)"

"p29=300u"


#   ifdef CALC_SP
"p41=(bwfac25/(cnst55*cnst51*bf1))*1000000"
"spw25=plw1*pow((p1*totrot25)/(p41*90.0*integfac25),2)"
"spw27=plw1*pow((p1*totrot27)/(p41*90.0*integfac27),2)"
"spoal25=1"
"spoal27=0"

"p42=(bwfac26/(cnst55*cnst52*bf1))*1000000"
"spw26=plw1*pow((p1*totrot26)/(p42*90.0*integfac26),2)"
"spoal26=0.5"

"p43=(bwfac28/(cnst55*cnst53*bf1))*1000000"
"spw28=plw1*pow((p1*totrot28)/(p43*90.0*integfac28),2)"
"spw29=plw1*pow((p1*totrot29)/(p43*90.0*integfac29),2)"
"spoal28=1"
"spoal29=0"
#   endif /*CALC_SP*/


"d0=3u"

"in0=inf1/2"


"DELTA1=d26-p29-d16-p41*cnst41-p42*cnst40"
"DELTA2=d26-p19-d16-p42/2"
"DELTA3=d26-p29-d16-p43*cnst43-p42*cnst42"
"DELTA4=p19+d16+de+8u"

#   ifdef LABEL_CN
"DELTA=p43-d0*2-p19-larger(p8,p44)"
#   else
"DELTA=p43-d0*2-p19-p44"
#   endif /*LABEL_CN*/


"spoffs25=bf1*(cnst54/1000000)-o1"
"spoffs26=bf1*(cnst54/1000000)-o1"
"spoffs27=bf1*(cnst54/1000000)-o1"
"spoffs28=bf1*(cnst54/1000000)-o1"
"spoffs29=bf1*(cnst54/1000000)-o1"
"spoffs30=0"


1 ze
  d11 pl26:f3
2 d11 do:f3
3 d1
  50u UNBLKGRAD

  (p41:sp25 ph1)
  p29:gp3
  d16
  DELTA1 pl3:f3
  (center (p42:sp26 ph1) (p22 ph6):f3 )
  DELTA1
  p29:gp3
  d16
  (p41:sp27 ph2):f1

  p16:gp4
  d16

  (p44:sp30 ph1)

  (p21 ph3):f3
  DELTA
  d0 

#   ifdef LABEL_CN
  (center (p44:sp30 ph7) (p8:sp13 ph1):f2 )
#   else
  (p44:sp30 ph7)
#   endif /*LABEL_CN*/

  d0
  p19:gp1*EA
  d16
  (p22 ph4):f3
  d16

  (p43:sp28 ph1)

  (p21 ph4):f3
  p19:gp5
  d16
  DELTA2
  (center (p42:sp26 ph1) (p22 ph1):f3 )
  DELTA2
  p19:gp5
  d16
  (p21 ph5):f3

  (p43:sp29 ph2)
  p29:gp6
  d16
  DELTA3
  (center (p42:sp26 ph1) (p22 ph1):f3 )
  DELTA3
  p29:gp6
  d16
  (p43:sp28 ph1)
  DELTA4
  (p42:sp26 ph1)
  4u
  p19:gp2
  d16 pl26:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 
     F1EA(calgrad(EA) & calph(ph5, +180), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=1 1 3 3
ph6=0
ph7=0 0 2 2
ph31=0 2 2 0
  

;pl3 : f3 channel - power level for pulse (default)
;pl26: f3 channel - power level for CPD/BB low power decoupling
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;sp25: f1 channel - shaped pulse  90 degree (Pc9_4_90.1000)
;sp26: f1 channel - shaped pulse 180 degree (Reburp.1000)
;sp27: f1 channel - shaped pulse  90 degree (Pc9_4_90.1000)
;                   for time reversed pulse
;sp28: f1 channel - shaped pulse  90 degree (Eburp2.1000)
;sp29: f1 channel - shaped pulse  90 degree (Eburp2tr.1000)
;                   for time reversed pulse
;sp30: f1 channel - shaped pulse 180 degree (Bip720,50,20.1)
;p8 : f2 channel - 180 degree shaped pulse for inversion(adiabatic)
;p16: homospoil/gradient pulse                         [1 msec]
;p19: gradient pulse 2                                 [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p29: gradient pulse 3                                 [300 usec]
;p41: f1 channel -  90 degree shaped pulse for excitation
;                      Pc9_4_90.1000             (2.2ms at 600.13 MHz)
;p42: f1 channel - 180 degree shaped pulse for refocussing
;                      Reburp.1000               (1.4ms at 600.13 MHz)
;p43: f1 channel -  90 degree shaped pulse for excitation
;                      Eburp2.1000/Eburp2tr.1000 (1.7ms at 600.13 MHz)
;p44: f1 channel - 180 degree shaped pulse for refocussing
;                      Bip720,50,20.1            (200us at 600.13 MHz)
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d26: 1/(4J(NH))
;cnst4: = J(NH)
;cnst40: compensation of chemical shift evolution during p42
;           Reburp.1000: 0.5
;           compensate to the extend the other delays allow
;cnst41: compensation of chemical shift evolution during p41
;           Pc9_4_90.1000: 0.529
;cnst42: compensation of chemical shift evolution during p42
;           Reburp.1000: 0.5
;cnst43: compensation of chemical shift evolution during p43
;           Eburp2.1000: 0.5
;cnst51: scaling factor for p41 to compensate for transition region
;           Pc9_4_90.1000: 1.172
;cnst52: scaling factor for p42 to compensate for transition region
;           Reburp.1000: 1.426
;cnst53: scaling factor for p43 to compensate for transition region
;           Eburp2.1000: 1.000
;cnst54: H(N) chemical shift (offset, in ppm)
;cnst55: H(N) bandwidth (in ppm)
;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(N)) = DW(N)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;aq: <= 50 msec
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd3: decoupling according to sequence defined by cpdprg3: garp4.p62
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence
;cpdprg3: garp4.p62


;for z-only gradients:
;gpz1: 80%
;gpz2: 8.1% for N-15
;gpz3: -13%
;gpz4: 50%
;gpz5: -33%
;gpz6: -2%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.32
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.32


                                          ;preprocessor-flags-start
;CALC_SP: for calculation of all bandselective Proton pulses based on cnst54 and cnst55
;             option -DCALC_SP (eda: ZGOPTNS)
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
