;b_trhncocanconhetgp5d.2
;avance-version (21/09/15)
;best-TROSY-HN(COCAN)CONNH
;5D sequence with
;   inverse correlation for triple resonance using multiple
;      via TROSY and inept transfer steps
;
;      F1(H,t1) -> F3(N,t2) -> F2(C=O)    -> F2(Ca)
;               -> F3(N)    -> F2(C=O,t3) -> F3(N,t4) -> F1(H,t5)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;phase sensitive (t3)
;phase sensitive using Echo/Antiecho-TPPI gradient selection (t4)
;using semi-constant time in t1
;using semi-constant time in t2
;using semi-constant time in t4
;uncompensated version d25=d26
;(use parameterset )
;
;A. Piai, T. Hosek, L. Gonnelli, A. Zawadzka-Kazimierczuk, W. Kozminski, B. Brutscher,
;   W. Bermel, R. Pierattelli & I.C. Felli, J. Biomol. NMR. 60, 209-218 (2014)
;(T. Schulte-Herbrueggen & O.W. Sorensen, J. Magn. Reson. 144,
;   123 - 128 (2000))
;
;$CLASS=HighRes
;$DIM=5D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<gradient> EA4 = { 0.8750 1.0000}
define list<gradient> EA6 = { 1.0000 0.6667}
define list<gradient> EA8 = { 0.6595 1.0000}


"p22=p21*2"
"d11=30m"

"d21=5.5m"
"d22=4.5m"
"d23=12.4m"
"d25=2.75m"
"d26=2.75m"
"d27=12.5m"

"p29=300u"


#   ifdef CALC_SP
"p42=(bwfac26/(cnst55*cnst52*bf1))*1000000"
"spw26=plw1*pow((p1*totrot26)/(p42*90.0*integfac26),2)"
"spoal26=0.5"

"p43=(bwfac28/(cnst55*cnst53*bf1))*1000000"
"spw28=plw1*pow((p1*totrot28)/(p43*90.0*integfac28),2)"
"spw29=plw1*pow((p1*totrot29)/(p43*90.0*integfac29),2)"
"spoal28=1"
"spoal29=0"
#   endif /*CALC_SP*/


"d32=3u"
"d33=3u"
"d34=3u"
"d51=3u"
"d52=3u"
"d54=3u"
"d31=d26-p29-d16"
"d41=d26+p22+d51-p29-d16"
"d42=d23+p14/2+d52"
"d44=d23+p14/2+d54"

"in31=inf1/2"
"in32=inf2/2"
"in33=inf3/2"
"in34=inf4/2"

"FACTOR1=d41*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in31 ) { in41 = in31; } else { in41 = INCR1; }"
"if ( INCR1 > in31 ) { in51 = 0; } else { in51=in31-INCR1; }"

"FACTOR2=d42*10000000*2/td2"
"INCR2=FACTOR2/10000000"

"if ( INCR2 > in32 ) { in42 = in32; } else { in42 = INCR2; }"
"if ( INCR2 > in32 ) { in52 = 0; } else { in52=in32-INCR2; }"

"FACTOR4=d44*10000000*2/td4"
"INCR4=FACTOR4/10000000"

"if ( INCR4 > in34 ) { in44 = in34; } else { in44 = INCR4; }"
"if ( INCR4 > in34 ) { in54 = 0; } else { in54=in34-INCR4; }"


"DELTA1=d27-d22"
"DELTA3=d23-p14*1.5-d34+p21*4/PI"
"DELTA4=d25-p29-d16-larger(p22,p42)/2-p43*cnst43"
"DELTA5=d26-p16-d16-larger(p22,p42)/2"
"DELTA7=d23-p14-4u"
"DELTA8=d33*2+larger(p14,p22)-p14"
"DELTA9=d26-p29-d16-larger(p22,p42)/2"
"DELTA10=d26-p14-d32-p44/2"
"DELTA11=d23-p14/2-p44/2-d26"

"TAU1=de+4u"


"l0=1"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst22-cnst21)/1000000)"
"spoffs7=bf2*((cnst21-cnst22)/1000000)"
"spoffs8=0"
"spoffs9=0"
"spoffs26=bf1*(cnst54/1000000)-o1"
"spoffs28=bf1*(cnst54/1000000)-o1"
"spoffs29=bf1*(cnst54/1000000)-o1"


"cnst62=-(bf1*cnst54-(o1*1000000))"
"cnst63=(bf1*cnst54-(o1*1000000))*(inf1/1000000)*360.0"

"TAU9=abs(cnst62+cnst63)/100000"


"o1_F1=bf1*cnst54/1000000"
"o1_F3=bf2*cnst21/1000000"


"acqt0=0"
baseopt_echo


1 d11 ze
  d11 pl3:f3
2 d11
3 20u

  (p22 ph1):f3
  d1 pl1:f1 fq=cnst21(bf ppm):f2
  50u UNBLKGRAD

  (p43:sp28 ph11)
  p29:gp11
  d16
  d31
  (p22 ph1):f3
  d51
  (p42:sp26 ph2)
  d41
  p29:gp11
  d16
  (p43:sp29 ph2):f1
  
  4u
  p16:gp1
  d16

  (p44:sp30 ph1)
  (p21 ph5):f3
  d32
  (p14:sp5 ph1):f2
  DELTA10
  (p44:sp30 ph1)
  DELTA11
  (p14:sp3 ph1):f2
  d52
  (p22 ph1):f3
  d42
  (p21 ph1):f3

  4u
  p16:gp2
  d16

  (p13:sp2 ph6):f2
  d22
  (p14:sp5 ph1):f2
  4u
  (p14:sp3 ph1):f2
  d22
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph2):f2

  4u
  p16:gp9
  d16 fq=cnst22(bf ppm):f2

  (p13:sp2 ph1):f2
  d22
  d27
  (p14:sp7 ph1):f2
  DELTA1
  (center (p24:sp9 ph1):f2 (p22 ph8):f3 )
  d27
  (p14:sp7 ph1):f2
  d27
  (p13:sp8 ph2):f2

  4u
  p16:gp3
  d16 fq=cnst21(bf ppm):f2

  (p21 ph1):f3
  DELTA7
  (p14:sp5 ph1):f2
  4u
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p21 ph1):f3

  (p13:sp2 ph10):f2
  d33
  (center (p14:sp5 ph1):f2 (p22 ph1):f3 )
  d33
  4u
  (p14:sp3 ph1):f2
  DELTA8
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  p16:gp10
  d16

  (p21 ph7):f3
  d44
  (p22 ph1):f3
  d54
  (p14:sp3 ph1):f2
  DELTA3
  (p14:sp5 ph1):f2
  d34

  p16:gp4*EA4
  d16
  TAU1

  (p43:sp29 ph8)
  p29:gp5
  d16
  DELTA4
  (center (p42:sp26 ph2) (p22 ph2):f3 )
  DELTA4
  p29:gp5
  d16
  (p43:sp28 ph1)

  p16:gp6*EA6
  d16
  TAU1

  (p21 ph1):f3
  p16:gp7
  d16
  DELTA5
  (center (p42:sp26 ph2) (p22 ph2):f3 )
  DELTA5
  p16:gp7
  d16 pl1:f1
  (p21 ph9:r):f3

  p16:gp8*EA8
  d16
  4u BLKGRAD

  go=2 ph31
  d11 mc #0 to 2
  F1PH(calph(ph11, +90), caldel(d31, +in31) & caldel(d41, -in41) & caldel(d51, +in51) & calph(ph11, cnst63))
  F2PH(calph(ph5, +90), caldel(d32, +in32) & caldel(d42, -in42) & caldel(d52, +in52))
  F3PH(calph(ph10, +90), caldel(d33, +in33))
  F4EA(calgrad(EA4) & calgrad(EA6) & calgrad(EA8) & calph(ph8, +180) & calph(ph9, +180), caldel(d34, +in34) & caldel(d44, -in44) & caldel(d54, +in54) & calph(ph7, +180) & calph(ph31, +180))

TAU9
exit


ph1=0
ph2=1
ph3=2
ph4=3
ph5=0 0 0 0 2 2 2 2
ph6=0 0 2 2
ph7=0 2
ph8=3
ph9=3
ph10=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph11=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp9: f2 channel - shaped pulse 180 degree  (Ca on resonance)
;     sp9 requires higher selectivity - refocussing Calpha only
;sp26: f1 channel - shaped pulse 180 degree (Reburp.1000)
;sp28: f1 channel - shaped pulse  90 degree (Eburp2.1000)
;sp29: f1 channel - shaped pulse  90 degree (Eburp2tr.1000)
;                   for time reversed pulse
;sp30: f1 channel - shaped pulse 180 degree (Bip720,50,20.1)
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse (Ca, selective)
;p29: gradient pulse 3                                 [300 usec]
;p42: f1 channel - 180 degree shaped pulse for refocussing
;                      Reburp.1000               (1.4ms at 600.13 MHz)
;p43: f1 channel -  90 degree shaped pulse for excitation
;                      Eburp2.1000/Eburp2tr.1000 (1.7ms at 600.13 MHz)
;p44: f1 channel - 180 degree shaped pulse for refocussing
;                      Bip720,50,20.1            (200us at 600.13 MHz)
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH)                                        [5.5 msec]
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCO)                                       [12.4 msec]
;d25: 1/(4J'(NH)                                       [2.75 msec]
;d26: 1/(4J(NH)                                        [2.75 msec]
;d27: 1/(4J(NCa)                                       [12.5 msec]
;d31: incremented delay (F1 in 3D) = d26-p29-d16
;d32: incremented delay (F2 in 3D)                     [3 usec]
;d33: incremented delay (F3 in 3D)                     [3 usec]
;d34: incremented delay (F4 in 3D)                     [3 usec]
;d41: decremented delay (F1 in 3D) = d26+p22+d51-p29-d16
;d42: decremented delay (F2 in 3D) = d23+p14/2+d52
;d44: decremented delay (F4 in 3D) = d23+p14/2+d54
;d51: incremented delay (F1 in 3D)                     [3 usec]
;d52: incremented delay (F2 in 3D)                     [3 usec]
;d54: incremented delay (F4 in 3D)                     [3 usec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst43: compensation of chemical shift evolution during p43
;           Eburp2.1000: 0.69
;cnst52: scaling factor for p42 to compensate for transition region
;           Reburp.1000: 1.426
;cnst53: scaling factor for p43 to compensate for transition region
;           Eburp2.1000: 1.000
;cnst54: H(N) chemical shift (offset, in ppm)
;cnst55: H(N) bandwidth (in ppm)
;cnst62: offset for H(N) region (Hz)
;cnst63: additional phase increment to center H(N) region
;o2p: Calpha chemical shift (cnst22)
;inf1: 1/SW(HN) = 2 * DW(HN)
;inf2: 1/SW(N) = 2 * DW(N)
;inf3: 1/SW(CO) = 2 * DW(CO)
;inf4: 1/SW(N) = 2 * DW(N)
;in31: 1/(2 * SW(HN)) = DW(HN)
;in32: 1/(2 * SW(N)) = DW(N)
;in33: 1/(2 * SW(CO)) = DW(CO)
;in34: 1/(2 * SW(N)) = DW(N)
;in41: = k1 * in31
;in42: = k2 * in32
;in44: = k4 * in34
;in51: = (1 - k1) * in31
;in52: = (1 - k2) * in32
;in54: = (1 - k4) * in34
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;td3: number of experiments in F3
;td4: number of experiments in F4
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;FnMODE: States-TPPI (or TPPI) in F3
;FnMODE: echo-antiecho in F4


;for z-only gradients:
;gpz1: 30%
;gpz2: 21%
;gpz3: 13%
;gpz4: -80%
;gpz5: 5%
;gpz6: 30%
;gpz7: 45%
;gpz8: 30.13%
;gpz9: 17%
;gpz10: 11%
;gpz11: 3%


;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam8: SMSQ10.100
;gpnam9: SMSQ10.100
;gpnam10: SMSQ10.100
;gpnam11: SMSQ10.100



                                          ;preprocessor-flags-start
;CALC_SP: for calculation of all bandselective Proton pulses based on cnst54 and cnst55
;             option -DCALC_SP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
