;b_trosyetf3gpsi
;avance-version (21/09/15)
;best-TROSY
;2D H-1/X correlation via TROSY
;   using sensitivity improvement
;phase sensitive using Echo/Antiecho gradient selection
;using f3 - channel
;uncompensated version d25=d26
;(use parameterset B_TROSYETF3GPSI)
;
;(E. Lescop, P. Schanda & B. Brutscher,
;   J. Magn. Reson.  187 163-169 (2007))
;(T. Schulte-Herbrueggen & O.W. Sorensen, J. Magn. Reson. 144, 
;   123 - 128 (2000))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<gradient> EA3 = { 1.0000 0.8750 }
define list<gradient> EA5 = { 0.6667 1.0000 }
define list<gradient> EA7 = { 1.0000 0.6595 }


"p22=p21*2"
"d11=30m"

"d25=2.4m"
"d26=2.4m"

"p29=300u"


#   ifdef CALC_SP
"p41=(bwfac25/(cnst55*cnst51*bf1))*1000000"
"spw25=plw1*pow((p1*totrot25)/(p41*90.0*integfac25),2)"
"spw27=plw1*pow((p1*totrot27)/(p41*90.0*integfac27),2)"
"spoal25=1"
"spoal27=0"

"p42=(bwfac26/(cnst55*cnst52*bf1))*1000000"
"spw26=plw1*pow((p1*totrot26)/(p42*90.0*integfac26),2)"
"spoal26=0.5"

"p43=(bwfac28/(cnst55*cnst53*bf1))*1000000"
"spw28=plw1*pow((p1*totrot28)/(p43*90.0*integfac28),2)"
"spw29=plw1*pow((p1*totrot29)/(p43*90.0*integfac29),2)"
"spoal28=1"
"spoal29=0"
#   endif /*CALC_SP*/


"d0=3u"

"in0=inf1/2"


"DELTA1=d26-p29-d16-p41*cnst41-p42*cnst40"
"DELTA6=d25-p29-d16-larger(p22,p42)/2"
"DELTA7=d26-p16-d16-p42/2"
"DELTA8=p43*cnst44-de"

#   ifdef LABEL_CN
"DELTA=d0*2+p8+p21*4/3.1416"
#   else
"DELTA=d0*2+p21*4/3.1416"
#   endif /*LABEL_CN*/


"spoffs13=bf2*(cnst26/1000000)-o2"

"spoffs25=bf1*(cnst54/1000000)-o1"
"spoffs26=bf1*(cnst54/1000000)-o1"
"spoffs27=bf1*(cnst54/1000000)-o1"
"spoffs28=bf1*(cnst54/1000000)-o1"
"spoffs29=bf1*(cnst54/1000000)-o1"


"acqt0=0"
baseopt_echo


1 d11 ze
2 d11
3 d1 pl1:f1
  50u UNBLKGRAD

  (p41:sp25 ph3)
  p29:gp1
  d16
  DELTA1
  (center (p42:sp26 ph2) (p22 ph1):f3 )
  DELTA1
  p29:gp1
  d16
  (p41:sp27 ph2):f1

  p16:gp2
  d16

  (p21 ph5):f3
  d0

#   ifdef LABEL_CN
  (p8:sp13 ph1):f2
#   else
#   endif /*LABEL_CN*/

  d0
  (p22 ph1):f3
  DELTA

  p16:gp3*EA3
  d16

  (p43:sp28 ph6)
  p29:gp4
  d16
  DELTA6
  (center (p42:sp26 ph2) (p22 ph2):f3 )
  DELTA6
  p29:gp4
  d16
  (p43:sp29 ph1)

  p16:gp5*EA5
  d16

  (p21 ph1):f3
  p16:gp6
  d16
  DELTA7 pl0:f1
  (center (p42:sp26 ph2) (p22 ph2):f3 )
  DELTA7
  p16:gp6
  d16 pl1:f1
  (p21 ph7:r):f3

  p16:gp7*EA7
  d16
  DELTA8
  4u BLKGRAD

  go=2 ph31
  d11 mc #0 to 2 
     F1EA(calgrad(EA3) & calgrad(EA5) & calgrad(EA7) & calph(ph6, +180) & calph(ph7, +180), caldel(d0, +in0) & calph(ph5, +180) & calph(ph31, +180))
exit


ph1=0
ph2=1 
ph3=2
ph4=3
ph5=0 2
ph6=1
ph7=1
ph31=0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;sp13: f2 channel - shaped pulse 180 degree (Ca and C=O, adiabatic)
;sp25: f1 channel - shaped pulse  90 degree (Pc9_4_90.1000)
;sp26: f1 channel - shaped pulse 180 degree (Reburp.1000)
;sp27: f1 channel - shaped pulse  90 degree (Pc9_4_90.1000)
;                   for time reversed pulse
;sp28: f1 channel - shaped pulse  90 degree (Eburp2.1000)
;sp29: f1 channel - shaped pulse  90 degree (Eburp2tr.1000)
;                   for time reversed pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p29: gradient pulse 3                                 [300 usec]
;p41: f1 channel -  90 degree shaped pulse for excitation
;                      Pc9_4_90.1000             (2.2ms at 600.13 MHz)
;p42: f1 channel - 180 degree shaped pulse for refocussing
;                      Reburp.1000               (1.4ms at 600.13 MHz)
;p43: f1 channel -  90 degree shaped pulse for excitation
;                      Eburp2.1000/Eburp2tr.1000 (1.7ms at 600.13 MHz)
;d0 : incremented delay (F1)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d25: 1/(4J'(NH)                                       [2.4 msec]
;d26: 1/(4J(NH)                                        [2.4 msec]
;cnst26: Call chemical shift (offset, in ppm)          [101 ppm]
;cnst40: compensation of chemical shift evolution during p42
;           Reburp.1000: 0.5
;           compensate to the extend the other delays allow
;cnst41: compensation of chemical shift evolution during p41
;           Pc9_4_90.1000: 0.529
;cnst44: compensation of chemical shift evolution during p43
;           Eburp2.1000: 0.69
;cnst51: scaling factor for p41 to compensate for transition region
;           Pc9_4_90.1000: 1.172
;cnst52: scaling factor for p42 to compensate for transition region
;           Reburp.1000: 1.426
;cnst53: scaling factor for p43 to compensate for transition region
;           Eburp2.1000: 1.000
;cnst54: H(N) chemical shift (offset, in ppm)
;cnst55: H(N) bandwidth (in ppm)
;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(N)) = DW(N)
;nd0: 2
;ns: 2 * n
;ds: >= 16
;td1: number of experiments in F1
;FnMODE: echo-antiecho in F1


;for z-only gradients:
;gpz1: 2%
;gpz2: 21%
;gpz3: -80%
;gpz4: 5%
;gpz5: 30%
;gpz6: 45%
;gpz7: 30.13%

;use gradient files:   
;gpnam1: SMSQ10.32
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.32
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100



                                          ;preprocessor-flags-start
;CALC_SP: for calculation of all bandselective Proton pulses based on cnst54 and cnst55
;             option -DCALC_SP (eda: ZGOPTNS)
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end
										  


;Processing

;PHC0(F1): 45.0



;$Id: $
