;c_cas_kr
;avance-version (21/09/15)
;music: Lys(K) and/or Arg(R)
;2D sequence with
;   13C detected correlation for triple resonance using
;      multiple inept transfer steps
;   CaCON based
;
;      F2(H) -> F1(C->->Ca) -> F1(C=O) -> F3(N,t1) -> F1(C=O,t2)
;
;options:
;   no option       N(Arg+1)
;   LABEL_LYS       N(Lys+1) + N(Arg+1)
;possible breakthrough: Leu, Gly, Asp
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;using IPAP scheme for virtual decoupling
;(use parameterset )
;
;W. Bermel, I. Bertini, J. Chill, I.C. Felli, N. Haba, V. Kumar M.V.
;   & R. Pierattelli, ChemBioChem 13, 2425-2432 (2012)
;(M. Schubert, H. Oschkinat & P. Schmieder,
;   J. Biomol. NMR 20, 379-384 (2001))
;(S. Grzesiek & A. Bax, J. Biomol. NMR 3, 185-204 (1993))
;(D.R. Muhandiram & L.E. Kay, J. Magn. Reson. B 103, 203-216 (1994))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include<Avance.incl>
#include<Grad.incl>
#include<Delay.incl>


"p4=p3*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d4=2.0m"
"d3=2.1m"
"d22=4.5m"
"d23=12.5m"
"d25=5.5m"
"d28=3.5m"

#   ifdef LABEL_LYS
"d24=8.8m"
#   else
"d24=4.5m"
#   endif /*LABEL_LYS*/


"d0=3u"

"in0=inf1/2"


"DELTA=d0*2+p8"
"DELTA1=d4-larger(p4,p34)/2"
"DELTA2=d28-d3-4u"
"DELTA3=d24"
"DELTA4=d24-d22+4u"

"TAU1=d23-d22-p12"
"TAU2=d23-p12-4u"
"TAU3=d23/2-p12/2"
"TAU4=d23-d22-p12"


"l0=1"


"spoffs13=bf1*((cnst22/2-cnst21/2)/1000000)"
"spoffs17=bf1*((cnst39-cnst23)/1000000)"
"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*((cnst21-cnst23)/1000000)"
"spoffs27=bf1*((cnst22-cnst21)/1000000)"

#   ifdef LABEL_LYS
"spoffs14=bf1*((cnst40-cnst23)/1000000)"
"spoffs15=bf1*((cnst40-cnst23)/1000000)"
"spoffs16=bf1*((cnst40-cnst23)/1000000)"
#   else
"spoffs14=bf1*((cnst38-cnst23)/1000000)"
"spoffs15=bf1*((cnst38-cnst23)/1000000)"
"spoffs16=bf1*((cnst38-cnst23)/1000000)"
#   endif /*LABEL_LYS*/


1 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 fq=cnst23(bf ppm):f1
  50u UNBLKGRAD
  d12 pl2:f2 pl3:f3

  (p3 ph2):f2
  DELTA1
  (center (p34:sp14 ph1) (p4 ph1):f2 )
  DELTA1
  (p3 ph1):f2

  p16:gp1
  d16 pl12:f2

  (p35:sp15 ph6)
  d3
  4u cpd2:f2 ph1
  DELTA2
  (p12:sp24 ph11)
  d28
  (p35:sp16 ph1)

  (p35:sp17 ph10)
  d25
  (p12:sp24 ph1)
  d25
  (p11:sp25 ph1)

  d25
  (p12:sp24 ph1)
  d25
  (p11:sp23 ph1)

#   ifdef LABEL_LYS
  
  d25
  (p12:sp24 ph1)
  d25
  (p11:sp25 ph1)

  4u
  (p12:sp26 ph1)
  DELTA3
  (p12:sp24 ph1)
  DELTA4
  (p12:sp26 ph1)
  d22
  (p11:sp23 ph1)

#   else

  4u
  (p12:sp26 ph1)
  DELTA3
  (p12:sp24 ph1)
  DELTA4
  (p12:sp26 ph1)
  d22
  (p11:sp25 ph1)

#   endif /*LABEL_LYS*/

  4u do:f2
  p16:gp2
  d16 fq=cnst21(bf ppm):f1
  20u cpd2:f2

  (p11:sp23 ph7)
  d22
  (p12:sp27 ph1)
  TAU1
  (center (p12:sp24 ph1) (p22 ph1):f3 )
  TAU2
  (p12:sp27 ph1)
  4u
  (p11:sp25 ph1)

  4u do:f2
  p16:gp3
  d16
  20u cpd2:f2

  (p21 ph5):f3
  d0
  (p8:sp13 ph1)
  d0
  (p22 ph1):f3
  DELTA
  (p21 ph1):f3

  4u do:f2
  p16:gp4
  d16
  20u cpd2:f2

  if "l0 %2 == 1"
     {
     (p11:sp23 ph1)
     TAU3
     (p12:sp27 ph1)
     TAU3
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     TAU3
     (p12:sp27 ph1)
     TAU3 pl16:f3
     }
  else
     {
     (p11:sp23 ph4)
     d22
     (p12:sp27 ph1)
     TAU4
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     TAU3
     TAU3 pl16:f3
     (p12:sp27 ph1)
     }

  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 

     F1I(iu0, 2)
     F1PH(calph(ph5, +90), caldel(d0, +in0)) 
exit


ph1=0
ph2=1
ph3=2
ph4=3
ph5=0 2
ph6=0 0 2 2
ph7=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph10=0 0 0 0 2 2 2 2
ph11=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
     1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
     3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp13: f1 channel - shaped pulse 180 degree  (adiabatic)
;sp14: f2 channel - shaped pulse 90 degree  (off res. at cnst38)
;                      or (off res. at cnst40) (LABEL_LYS)
;sp15: f2 channel - shaped pulse 90 degree  (off res. at cnst38)
;                      or (off res. at cnst40) (LABEL_LYS)
;sp16: f2 channel - shaped pulse 90 degree  (off res. at cnst38)
;                      or (off res. at cnst40) (LABEL_LYS)
;                   for time reversed pulse
;sp17: f2 channel - shaped pulse 90 degree  (off res. at cnst39)
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp27: f1 channel - shaped pulse 180 degree  (Ca off resonance)
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f1 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse (sp23, sp25)
;p12: f1 channel - 180 degree shaped pulse (sp24, sp26, sp27)
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p34: f2 channel - 180 degree shaped pulse (sp14)
;                      (Q3.1000: 2.0ms at 600.13 MHz)
;p35: f2 channel - 180 degree shaped pulse (sp15, sp16, sp17)
;                      (Q5.1000/Q5tr.1000: 3.7ms at 600.13 MHz)
;d0 : incremented delay (F1 in 2D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(4J(CH))                                       [2.1 msec]
;d4 : 1/(4J(CH))                                       [2.0 msec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d22: 1/(4J(CaCO))                                     [4.5 msec]
;d23: 1/(4J(NCO))                                      [12.5 msec]
;d24: 1/(4J(CC))                                       [4.5m msec]
;     or 1/(4J(CC))(LABEL_LYS)                         [8.8 msec]
;d25: 1/(4J(CC))                                       [5.5 msec]
;d28: 1/(8J(CC))                                       [3.5 msec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;cnst38: Cd(Arg) chem. shift (offset,in ppm)           [42.0 ppm]
;cnst39: Cg(Arg)/Cd(Lys) chem. shift (offset,in ppm)   [29 ppm]
;cnst40: Ce(Lys) chemical shift (offset, in ppm)       [44.5 ppm]
;o1p: CO chemical shift (cnst21)
;l0: flag to switch between inphase and antiphase
;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(N)) = DW(N)
;nd0: 2
;ns: 8 * n
;ds: = 32
;td1: number of experiments in F1
;FnMODE: States-TPPI (or TPPI) in F1
;cpd2: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 3%
;gpz2: 50%
;gpz3: 30%
;gpz4: 19%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100



                                          ;preprocessor-flags-start
;LABEL_LYS: for Lys(+Arg) start experiment with
;             option -DLABEL_LYS (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;use AU-program splitcomb [ipap 2] to process data



;$Id: $
