;c_cas_pro_2
;avance-version (21/09/15)
;music: Pro(P)
;2D sequence with
;   13C detected correlation for triple resonance using
;      multiple inept transfer steps
;   quaternary N selection
;   CaNCO based
;
;      F2(H) -> F1(Ca) -> F3(N,t1) -> F1(C=O,t2)
;
;options:
;   no option       N(Pro) and N(Pro+1)
;possible breakthrough:
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;using constant time in t1
;using IPAP scheme for virtual decoupling
;(use parameterset )
;
;W. Bermel, I. Bertini, J. Chill, I.C. Felli, N. Haba, V. Kumar M.V.
;   & R. Pierattelli, ChemBioChem 13, 2425-2432 (2012)
;(M. Schubert, L. Ball, H. Oschkinat & P. Schmieder,
;   J. Biomol. NMR 17, 331-335 (2000))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p4=p3*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=1.1m"
"d4=1.8m"
"d22=4.5m"
"d23=13.3m"
"d26=2.77m"
"d27=16.0m"


"d0=d26"
"d20=d27"

"in0=inf1/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA1=d23-d3-p4"
"DELTA2=d23-d26-p4"
"DELTA3=d27-d23-p12"
"DELTA4=d27/2-p12/2"
"DELTA5=d27-d22-p12"


"l0=1"


"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs27=bf1*((cnst22-cnst21)/1000000)"
"spoffs28=0"


1 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 fq=cnst22(bf ppm):f1
  d12 pl2:f2 pl3:f3
  50u UNBLKGRAD

  (p3 ph1):f2
  d4 
  (center (p12:sp24 ph1) (p4 ph1):f2 )
  d4
  (p3 ph2):f2

  p16:gp1
  d16

  (p11:sp23 ph3)
  d3
  (p4 ph6):f2
  DELTA1
  (center (p25:sp28 ph1) (p22 ph1):f3 )
  d23
  (p11:sp25 ph1)

  p16:gp2
  d16 fq=cnst21(bf ppm):f1

  (p21 ph4):f3
  d0
  (p4 ph1):f2
  DELTA2
  (p12:sp27 ph6)
  DELTA3
  (center (p12:sp24 ph6) (p22 ph1):f3 )
  d20
  (p21 ph1):f3
  (p3 ph1):f2

  p16:gp3
  d16 pl12:f2 
  20u cpd2:f2

  if "l0 %2 == 1"
     {
     (p11:sp23 ph5)
     DELTA4
     (p12:sp27 ph1)
     DELTA4
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA4
     (p12:sp27 ph1)
     DELTA4 pl16:f3
     }
  else
     {
     (p11:sp23 ph7)
     d22
     (p12:sp27 ph1)
     DELTA5
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA4
     DELTA4 pl16:f3
     (p12:sp27 ph1)
     }
  
  4u BLKGRAD

  go=2 ph31 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 
     F1I(iu0, 2)
     F1PH(calph(ph4, +90), caldel(d0, +in0) & caldel(d20, -in20))
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=0 0 0 0 2 2 2 2
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph7=3 3 3 3 1 1 1 1
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp27: f1 channel - shaped pulse 180 degree  (Ca off resonance)
;sp28: f1 channel - shaped pulse 180 degree  (on resonance)
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse (sp23, sp25)
;p12: f1 channel - 180 degree shaped pulse (sp24, sp27)
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p25: f1 channel - 180 degree shaped pulse (sp28)
;                      (Q3.1000: 1.0ms at 600.13 MHz)
;d0 : incremented delay (F1 in 2D) = d26
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(HCa))                                      [1.1 msec]
;d4 : 1/(4J(HCa))                                      [1.8 msec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 2D) = d27
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCa))                                      [13.3 msec]
;d26: 1/(4J(NH))                                       [2.77 msec]
;d27: 1/(4J(NCO))                                      [16.0 msec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o1p: CO chemical shift (cnst21)
;l0: flag to switch between inphase and antiphase
;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(N)) =  DW(N)
;nd0: 2
;in20: = in0
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1
;FnMODE: States-TPPI (or TPPI) in F1   td1 max = 2 * d20 / in20
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 30%
;gpz3: 19%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;use AU-program splitcomb [ipap 2] to process data



;$Id: $
