;c_cbcaco_s33d
;avance-version (21/09/15)
;CbCaCO
;3D sequence with
;   13C detected correlation for triple resonance using
;      multiple inept transfer steps
;
;      F1(Ca/b,t1) -> F1(Ca,t2) -> F1(C=O,t3)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t1
;using constant time in t2
;using S3E-IPAP scheme for virtual decoupling
;(use parameterset C_CBCACO_S33D)
;
;W. Bermel, I. Bertini, L. Duma, I.C. Felli, L. Emsley,  R. Pierattelli,
;   & P.R. Vasos, Angew. Chem. Int. Ed. 44, 3089-3092 (2005)
;(L. Duma, S. Hediger, A. Lesage & L. Emsley,
;   J. Magn. Reson. 164, 187-195 (2003) )
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"d11=30m"
"d12=20u"

"d22=4.5m"
"d25=4.0m"


"d0=3u"
"d10=d25-p12-4u"
"d20=d25-p12-4u"
"d30=d25-p12-4u"

"in0=inf1/2"
"in10=inf2/2"

"in20=in0"
"in30=in10"

"td1=tdmax(td1,d20*2,in20)"
"td2=tdmax(td2,d30*2,in30)"


"DELTA1=d25-d0-p12"


"l0=1"


"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*((cnst21-cnst23)/1000000)"
"spoffs27=bf1*((cnst22-cnst21)/1000000)"


"o1_F1=bf1*cnst23/1000000"
"o1_F2=bf1*cnst23/1000000"


aqseq 312


1 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 fq=cnst23(bf ppm):f1
  d12 cpd2:f2 cpd3:f3
  50u UNBLKGRAD

  (p11:sp23 ph3)
  d0
  (p12:sp26 ph7)
  DELTA1
  (p12:sp24 ph1)
  d20
  (p12:sp26 ph1)
  4u
  (p11:sp25 ph2)

  4u
  (p12:sp26 ph1)
  d10
  (p12:sp24 ph1)
  4u
  (p12:sp26 ph1)
  d30
  (p11:sp23 ph4)

  4u do:f2 do:f3
  p16:gp1
  d16 fq=cnst21(bf ppm):f1
  20u cpd2:f2 cpd3:f3

  if "l0 %2 == 1"
     {
     (p11:sp23 ph5)
     }
  else
     {
     (p11:sp23 ph6)
     }

  4u
  (p12:sp27 ph1)
  d22*0.5
  (p12:sp24 ph1)
  4u
  (p12:sp27 ph1)
  d22*0.5

  (p11:sp25 ph8)
  4u
  (p11:sp23 ph9)

  4u BLKGRAD

  go=2 ph31
  d11 do:f2 do:f3 mc #0 to 2 
     F1I(iu0 & ip9*2, 2)
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20)) 
     F2PH(calph(ph4, +90), caldel(d10, +in10) & caldel(d30, -in30))
exit


ph1=0
ph2=1
ph3=0 2
ph4=1 1 3 3
ph5=(8) 1 1 1 1 1 1 1 1
ph6=(8) 1 1 1 1 5 5 5 5
ph7=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph8=0 0 0 0 1 1 1 1
ph9=0 0 0 0 1 1 1 1
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp27: f1 channel - shaped pulse 180 degree  (Ca off resonance)
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D) = d25-p12-4u
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d25-p12-4u
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d25: 1/(8J'(CaCb))                                    [4.0 msec]
;d30: decremented delay (F2 in 3D) = d25-p12-4u
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o1p: CO chemical shift (cnst21)
;l0: flag to switch between inphase and antiphase
;inf1: 1/SW(Ca/b) = 2 * DW(Ca/b)
;inf2: 1/SW(Ca) = 2 * DW(Ca)
;in0: 1/(2 * SW(Ca/b)) =  DW(Ca/b)
;nd0: 2
;in10: 1/(2 * SW(Ca)) =  DW(Ca)
;nd10: 2
;in20: = in0
;in30: = in10
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1 * 2
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1   td1 max = 2 * d20 / in20
;FnMODE: States-TPPI (or TPPI) in F2   td2 max = 2 * d30 / in30
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1
;                         30

;for z-only gradients:
;gpz1: 30%

;use gradient files:
;gpnam1: SMSQ10.100



;use AU-program splitcomb [s3e 2] (F1) to process data



;$Id: $
