;c_cbcacon_ia3d_pro
;avance-version (21/09/15)
;CbCaCON
;3D sequence with
;   13C detected correlation for triple resonance using
;      multiple inept transfer steps
;
;      F1(Ca/b,t1) -> F1(Ca) -> F1(C=O) 
;                            -> F3(N,t2) -> F1(C=O,t3)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t1
;using IPAP scheme for virtual decoupling
;using selective N pulse for Pro
;(use parameterset C_CBCACON_IA3D)
;
;M.G. Murrali, A. Piai, W. Bermel, I.C. Felli & R. Pierattelli,
;   ChemBioChem 19, 1625-1629 (2018)
;W. Bermel, I. Bertini, I.C. Felli, R. Kuemmerle 
;   & R. Pierattelli, J. Magn. Reson. 178, 56-64 (2006)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p22=p21*2"
"d11=30m"
"d12=20u"


"d22=4.5m"
"d23=16.6m"
"d25=4.0m"


"d0=3u"
"d10=3u"
"d20=d25-p12-4u"

"in0=inf1/2"
"in10=inf2/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA=d10*2+p8"
"DELTA1=d25-d0-larger(p12,p22)"
"DELTA2=d23-d22-p12"
"DELTA3=d23-p12-larger(p12,p59)/2-4u"
"DELTA4=d23/2-p12/2"
"DELTA5=d23-d22-p12-larger(p12,p59)/2"


"l0=1"


"spoffs13=bf1*((cnst22/2-cnst21/2)/1000000)"
"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*((cnst21-cnst23)/1000000)"
"spoffs27=bf1*((cnst22-cnst21)/1000000)"


"o1_F1=bf1*cnst23/1000000"


aqseq 321


1 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 fq=cnst23(bf ppm):f1
  d12 cpd2:f2 pl3:f3
  50u UNBLKGRAD

  (p11:sp23 ph3)
  d0
  (center (p12:sp26 ph6) (p22 ph1):f3 )
  DELTA1
  (p12:sp24 ph1)
  d20
  (p12:sp26 ph1)
  4u
  (p11:sp25 ph2)

  4u
  (p12:sp26 ph1)
  d25
  (p12:sp24 ph1)
  4u
  (p12:sp26 ph1)
  d25
  (p11:sp23 ph2)

  4u do:f2
  p16:gp1
  d16 fq=cnst21(bf ppm):f1
  20u cpd2:f2

  (p11:sp23 ph1)
  d22
  (p12:sp27 ph1)
  DELTA5
  (center (p12:sp24 ph1) (p59:sp46 ph1):f3 )
  DELTA3
  (p12:sp27 ph1)
  4u
  (p11:sp25 ph1)

  4u do:f2
  p16:gp2
  d16 pl3:f3
  20u cpd2:f2

  (p21 ph4):f3
  d10
  (p8:sp13 ph6)
  d10
  (p22 ph1):f3
  DELTA
  (p21 ph5):f3

  if "l0 %2 == 1"
     {
     (p11:sp23 ph1)
     DELTA4
     (p12:sp27 ph1)
     DELTA4
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA4
     (p12:sp27 ph1)
     DELTA4 pl16:f3
     }
  else
     {
     (p11:sp23 ph7)
     d22
     (p12:sp27 ph1)
     DELTA2
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA4
     DELTA4 pl16:f3
     (p12:sp27 ph1)
     }

  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 

#   ifdef LABEL_F1
     F1I(iu0, 2)
#   else
     F2I(iu0, 2)
#   endif /*LABEL_F1*/

     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20))
     F2PH(calph(ph4, +90), caldel(d10, +in10))
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=0 0 0 0 2 2 2 2
ph7=3
ph31=0 2 2 0 0 2 2 0 2 0 0 2 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp13: f1 channel - shaped pulse 180 degree  (adiabatic)
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp27: f1 channel - shaped pulse 180 degree  (Ca off resonance)
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d25-p12-4u
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCO))                                      [16.6 msec]
;d25: 1/(8J'(CaCb))                                    [4.0 msec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o1p: CO chemical shift (cnst21)
;l0: flag to switch between inphase and antiphase
;inf1: 1/SW(Ca/b) = 2 * DW(Ca/b)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Ca/b)) =  DW(Ca/b)
;nd0: 2
;in10: 1/(2 * SW(N)) =  DW(N)
;nd10: 2
;in20: = in0
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1 * 2
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1   td1 max = 2 * d20 / in20
;FnMODE: States-TPPI (or TPPI) in F2
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2
;                         50 :   30

;for z-only gradients:
;gpz1: 50%
;gpz2: 30%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_F1: to do ipap in F1 start experiment with
;             option -DLABEL_F1 (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;use AU-program splitcomb [ipap 2] to process data



;$Id: $
