;c_ccco_ia3d
;avance-version (21/09/15)
;CCCO
;3D sequence with
;   13C detected correlation for triple resonance using
;      multiple inept transfer steps and
;      C-C FLOPSY16 spinlock
;
;      F1(Cali,t1) -> F1(Ca,t2) -> F1(C=O,t3)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;phase sensitive (t2)
;using semi-constant time in t2
;using IPAP scheme for virtual decoupling
;(use parameterset C_CCCO_IA3D)
;
;W. Bermel, I. Bertini, I.C. Felli, R. Kuemmerle
;   & R. Pierattelli, J. Magn. Reson. 178, 56-64 (2006)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p22=p21*2"
"d11=30m"
"d12=20u"

"d22=4.5m"


"d0=3u"
"d10=d22"
"d29=3u"
"d30=d22+d29-4u"

"in0=inf1/2"
"in10=inf2/2"

"FACTOR1=d30*10000000*2/td2"
"INCR2=FACTOR1/10000000"

"if ( INCR2 > in10 ) { in29 = 0; } else { in29=in10-INCR2; }"
"if ( INCR2 > in10 ) { in30 = in10; } else { in30 = INCR2; }"


"DELTA1=d0*2+larger(p12,p22)-p12"


"FACTOR2=(d9/(p6*188.448))"
"l1=FACTOR2"


"l0=1"


"spoffs22=bf1*((cnst21-cnst22)/1000000)"
"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*((cnst21-cnst23)/1000000)"
"spoffs27=bf1*((cnst22-cnst21)/1000000)"
"spoffs28=0"


"o1_F1=bf1*cnst23/1000000"


aqseq 312


1 ze 
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 fq=cnst23(bf ppm):f1
  d12 cpd2:f2 pl3:f3
  50u UNBLKGRAD

  (p11:sp23 ph3)
  d0
  (center (p12:sp26 ph1) (p22 ph1):f3 )
  d0
  4u
  (p12:sp24 ph1)
  DELTA1
  (p12:sp26 ph1)
  4u

  (p11:sp25 ph1)

  4u do:f2
  p16:gp1
  d16 pl10:f1
						;begin FLOPSY16
4 p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11
  lo to 4 times l1
						;end FLOPSY16

  p16:gp2
  d16 fq=cnst22(bf ppm):f1
  20u cpd2:f2 pl16:f3

  (p11:sp23 ph4)
  d10
  (p12:sp22 ph1)
  d29
  (p25:sp28 ph1)
  d30
  (p12:sp22 ph1)
  4u
  (p11:sp25 ph2)

  4u do:f2
  p16:gp3
  d16 fq=cnst21(bf ppm):f1
  20u cpd2:f2

  if "l0 %2 == 1"
     {
     (p11:sp23 ph5)
     4u
     (p12:sp27 ph1)
     d22
     (p12:sp24 ph1)
     4u
     (p12:sp27 ph1)
     d22
     }
  else
     {
     (p11:sp23 ph6)
     4u
     d22*0.5
     (p12:sp27 ph1)
     d22*0.5
     (p12:sp24 ph1)
     4u
     d22*0.5
     (p12:sp27 ph1)
     d22*0.5
     }

  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 
     F1I(iu0, 2)
     F1PH(calph(ph3, +90), caldel(d0, +in0))
     F2PH(calph(ph4, +90), caldel(d10, +in10) & caldel(d29, +in29) & caldel(d30, -in30))
exit 


ph1=0
ph2=1
ph3=0 2
ph4=0 0 2 2 
ph5=0 0 0 0 2 2 2 2
ph6=3 3 3 3 1 1 1 1

ph11=(720) 0
ph12=(720) 90
ph13=(720) 135
ph14=(720) 630
ph15=(720) 45

ph21=(720) 360
ph22=(720) 450
ph23=(720) 495
ph24=(720) 270
ph25=(720) 405

ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp22: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp27: f1 channel - shaped pulse 180 degree  (Ca off resonance)
;sp28: f1 channel - shaped pulse 180 degree  (Ca on resonance)
;                   sp28 requires higher selectivity than sp24
;p6 : f1 channel -  90 degree low power pulse
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p25: f1 channel - 180 degree shaped pulse (Ca, sp28)
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time                                [12 msec]
;d10: incremented delay (F2 in 3D) = d22
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery            [150 usec]
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d29: incremented delay (F2 in 3D)                     [3 usec]
;d30: decremented delay (F2 in 3D) = d22+d29-4u
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o1p: CO chemical shift (cnst21)
;l0: flag to switch between inphase and antiphase
;l1: loop for FLOPSY16 cycle: ((p6*188.448) * l1) = mixing time
;inf1: 1/SW(Cali) = 2 * DW(Cali)
;inf2: 1/SW(Ca) = 2 * DW(Ca)
;in0: 1/(2 * SW(Cali)) =  DW(Cali)
;nd0: 2
;in10: 1/(2 * SW(Ca)) =  DW(Ca)
;nd10: 2
;in29: = in10 - in30
;in30: = (d30 *2 / td2) or in10
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1 * 2
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2 : gp 3
;                         60 :   50 :   11

;for z-only gradients:
;gpz1: 60%
;gpz2: 50%
;gpz3: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;use AU-program splitcomb [ipap 2] (F1) to process data



;$Id: $
