;c_ccflopsy16_ctia
;avance-version (21/09/15)
;CC-TOCSY
;2D sequence with
;   homonuclear Hartman-Hahn transfer using FLOPSY16 
;      sequence for mixing
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;using constant time in t1
;using DIPAP scheme for virtual decoupling
;(use parameterset C_CCFLOPSY16_CTIA)
;
;W. Bermel, I. Bertini,L. Duma, I.C. Felli, L. Emsley,  R. Pierattelli,
;   P.R. Vasos, Angew. Chem. Int. Ed. 44, 3089-3092 (2005)
;(L. Duma, S. Hediger, A. Lesage & L. Emsley,
;   J. Magn. Reson. 164, 187-195 (2003) )
;(A. Eletsky, O.Moreira, H. Kovacs & K. Pervushin, 
;   J. Biomol. NMR 26, 167-179 (2003) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"d11=30m"
"d12=20u"

"d22=4.5m"
"d23=13.3m"
"d27=3.6m"


"d0=3u"
"d20=d23+d0-4u"

"in0=inf1/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"FACTOR1=(d9/(p6*188.448))"
"l1=FACTOR1"


"DELTA1=d27-p12/2"
"DELTA2=d27+d22/2-p12/2"
"DELTA3=d27-d22/2-p12/2"


"l0=0"


"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*((cnst21-cnst23)/1000000)"
"spoffs27=bf1*((cnst21-cnst22)/1000000)"
"spoffs28=0"
"spoffs29=bf1*((cnst23-cnst22)/1000000)"


"o1_F1=bf1*cnst23/1000000"


1 ze 
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 pl1:f1 fq=cnst23(bf ppm):f1
  50u UNBLKGRAD
  d12 cpd2:f2 cpd3:f3

  (p11:sp23 ph3)
  d0
  (p12:sp26 ph1)
  d23
  (p12:sp24 ph1)
  d20
  (p12:sp26 ph1)
  4u
  (p11:sp25 ph4)

  4u do:f2 do:f3
  p16:gp1
  d16 pl10:f1
						;begin FLOPSY16
4 p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11
  lo to 4 times l1
						;end FLOPSY16

  p16:gp2
  d16 fq=cnst22(bf ppm):f1 
  20u cpd2:f2 cpd3:f3
  4u BLKGRAD

  if "l0 %4 == 0"
     {
     (p11:sp23 ph5)
     4u
     (p12:sp29 ph1)
     DELTA1
     (p12:sp27 ph1)
     DELTA1
     4u
     (p25:sp28 ph1)
     DELTA1
     (p12:sp27 ph1)
     DELTA1
     }
  if "l0 %4 == 1"
     {
     (p11:sp23 ph6)
     4u
     (p12:sp29 ph1)
     DELTA2
     (p12:sp27 ph1)
     DELTA3
     4u
     (p25:sp28 ph1)
     DELTA2
     (p12:sp27 ph1)
     DELTA3
     }
  if "l0 %4 == 2"
     {
     (p11:sp23 ph7)
     4u
     (p25:sp28 ph1)
     DELTA1
     (p12:sp27 ph1)
     DELTA1
     4u
     (p12:sp29 ph1)
     DELTA1
     (p12:sp27 ph1)
     DELTA1
     }
  if "l0 %4 == 3"
     {
     (p11:sp23 ph5)
     4u
     (p25:sp28 ph1)
     DELTA2
     (p12:sp27 ph1)
     DELTA3
     4u
     (p12:sp29 ph1)
     DELTA2
     (p12:sp27 ph1)
     DELTA3
     }

  go=2 ph31
  d11 do:f2 do:f3 mc #0 to 2 
     F1I(iu0, 4)
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20))
exit 


ph1=0
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2 
ph6=1 1 3 3
ph7=3 3 1 1

ph11=(720) 0
ph12=(720) 90
ph13=(720) 135
ph14=(720) 630
ph15=(720) 45

ph21=(720) 360
ph22=(720) 450
ph23=(720) 495
ph24=(720) 270
ph25=(720) 405

ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp27: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp28: f1 channel - shaped pulse 180 degree  (Ca on resonance)
;                   sp28 requires higher selectivity than sp24
;sp29: f1 channel - shaped pulse 180 degree  (Cali off resonance)
;p6 : f1 channel -  90 degree low power pulse
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p25: f1 channel - 180 degree shaped pulse (Ca, sp28)
;d0 : incremented delay (F1 in 2D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 2D) = d27+d0-4u
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(2J(CaCb))                                     [13.3 msec]
;d27: 1/(8J(CaCb))                                     [3.6 msec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o1p: Calpha chemical shift (cnst22)
;l0: flag to switch between inphase and antiphase
;l1: loop for FLOPSY16 cycle: ((p6*188.448) * l1) = mixing time
;inf1: 1/SW(Cali) = 2 * DW(Cali)
;in0: 1/(2 * SW(Cali)) =  DW(Cali)
;nd0: 2
;in20: = in0
;ns: 8 * n
;ds: >= 32
;td1: number of experiments in F1 * 4
;FnMODE: States-TPPI (or TPPI) in F1   td1 max = 2 * d20 / in20
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2
;                         80 :   70

;for z-only gradients:
;gpz1: 80%
;gpz2: 70%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;use AU-program splitcomb [ipap 4] to process data



;$Id: $
