;c_coca_mq.2
;avance-version (21/09/15)
;MQ-CaCO
;2D sequence with
;   13C detected correlation for triple resonance using
;      zero and double quantum coherence
;
;      F1(CO) -> F1(Ca,HMQC,t1) -> F1(CO,t2)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;with Bloch Siegert compensation
;(use parameterset C_COCA_MQ.2)
;
;M. Kostic, S.S. Pochapsky & T.C. Pochapsky,
;   J. Am. Chem. Soc. 124, 9054-9055 (2002)
;W. Bermel, I. Bertini, I.C. Felli, R. Kuemmerle &
;   R. Pierattelli, J. Am. Chem. Soc. 125, 16423-16429 (2003)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"d11=30m"
"d12=20u"

"d22=4.5m"


"d0=3u"

"in0=inf1/2"


"DELTA=d0*2"
"DELTA1=d22*2-d12-4u"
"DELTA2=d22*2-d12-p11*2+p12+d0*2-8u"


"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*((cnst21-cnst22)/1000000)"


"o1_F1=bf1*cnst22/1000000"


1 ze 
  d11 pl12:f2 pl16:f3
  d11 fq=cnst21(bf ppm):f1
2 d11 do:f2 do:f3
3 d1
  d12 cpd2:f2 cpd3:f3

  (p11:sp23 ph3)
  DELTA1 
  d12 fq=cnst22(bf ppm):f1
  4u
  (p12:sp26 ph1)
  4u

  (p11:sp23 ph4)
  d0
  (p12:sp26 ph5)
  d0
  4u
  (p12:sp24 ph1)
  DELTA
  (p12:sp26 ph1)
  4u
  (p11:sp25 ph6)

  4u
  d12 fq=cnst21(bf ppm):f1
  DELTA2 

  go=2 ph31
  d11 do:f2 do:f3 mc #0 to 2 
     F1PH(calph(ph4, +90), caldel(d0, +in0))
exit 
  

ph1=0
ph2=1
ph3=0
ph4=0 2
ph5=0 0 1 1 
ph6=0 0 0 0 2 2 2 2
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;d0 : incremented delay (F1 in 2D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d22: 1/(4J(COCa))                                     [4.5 msec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o1p: CO chemical shift (cnst21)
;inf1: 1/SW(Ca) = 2 * DW(Ca)
;in0: 1/(2 * SW(Ca)) =  DW(Ca)
;nd0: 2
;ns: 8 * n
;ds: >= 32
;td1: number of experiments in F1
;FnMODE: States-TPPI (or TPPI) in F1
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence



;$Id: $
