;c_coco_ia
;avance-version (21/09/15)
;COCO-TOCSY
;2D sequence with
;   homonuclear Hartman-Hahn transfer using MOCCA-XY16
;      sequence for mixing
;on/off resonance 13C pulses using hard and shaped pulses
;phase sensitive (t1)
;using IPAP scheme for virtual decoupling
;(use parameterset )
;
;I.C. Felli, R. Pierattelli, S.J. Glaser & B. Luy, 
;   J. Biomol. NMR 43, 187-196 (2009)
;S. Balayssac, B. Jimenez & M. Piccioli,
;   J. Magn. Reson. 182, 325-329 (2006)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"d11=30m"
"d12=20u"

"d22=4.5m"

"d21=300u"


"d0=3u"

"in0=inf1/2"


"TAU=d21/2"

"FACTOR1=(d9/((d21+p14)*16))"
"l1=FACTOR1*16"

"d31=(d21+p14)*l1"


"DELTA=d0*2"


"l0=0"


"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*(cnst22/1000000)-o1"


1 ze 
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 pl1:f1
  20u rpp11
  50u UNBLKGRAD
  d12 cpd2:f2 cpd3:f3

  (p11:sp23 ph3)
  d0
  (p12:sp26 ph1)
  d0
  4u
  (p12:sp24 ph1)
  DELTA
  (p12:sp26 ph1)
  4u
  (p11:sp25 ph4)

  4u do:f2 do:f3
  p16:gp1
  d16 pl20:f1

						;begin MOCCA-XY16
4 TAU
  (p14 ph11)
  TAU ipp11
  lo to 4 times l1
						;end MOCCA-XY16

  p16:gp2
  d16
  20u cpd3:f3

  if "l0 %2 == 1"
     {
     (p11:sp23 ph5)
     4u
     (p12:sp26 ph1)
     d22
     (p12:sp24 ph1)
     4u
     (p12:sp26 ph1)
     d22 BLKGRAD
     }
  else
     {
     (p11:sp23 ph6)
     4u
     d22*0.5
     (p12:sp26 ph1)
     d22*0.5
     (p12:sp24 ph1)
     4u
     d22*0.5
     (p12:sp26 ph1)
     d22*0.5 BLKGRAD
     }

  go=2 ph31
  d11 do:f3 mc #0 to 2 
     F1I(iu0, 2)
     F1PH(calph(ph3, +90), caldel(d0, +in0))

  d31
exit 


ph1=0
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=0 0 0 0 2 2 2 2
ph6=3 3 3 3 1 1 1 1
ph11=0 1 0 1 1 0 1 0 2 3 2 3 3 2 3 2
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;pl20: f1 channel - power level for TOCSY (high sel.)
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (Ca off resonance)
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p14: f1 channel - 180 degree low power pulse at pl20
;p16: homospoil/gradient pulse                         [1 msec]
;d0 : incremented delay (F1 in 2D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d21: delay for MOCCA sequence                         [300 usec]
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d31: total mixing time as executed
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o1p: CO chemical shift (cnst21)
;l0: flag to switch between inphase and antiphase
;l1: loop for MOCCA-XY16 cycle: ((TAU*2+p14)*16 * l1) = mixing time
;inf1: 1/SW(CO) = 2 * DW(CO)
;in0: 1/(2 * SW(CO)) =  DW(CO)
;nd0: 2
;ns: 8 * n
;ds: >= 32
;td1: number of experiments in F1 * 2
;FnMODE: States-TPPI (or TPPI) in F1
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 70%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;use AU-program splitcomb [ipap 2] to process data



;$Id: $
