;c_con_iasisq
;avance-version (21/09/15)
;CON
;2D sequence with
;   13C detected correlation for triple resonance using 
;      inept transfer steps
;   using sensitivity improvement
;
;      F1(C=O) -> F3(N,t1) -> F1(C=O,t2)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;using IPAP scheme for virtual decoupling (for N15 as well)
;(use parameterset )
;
;W. Bermel, I. Bertini, V. Csizmok, I. C. Felli, R. Pierattelli & 
;   P. Tompa, J. Magn. Reson. 198, 275-281 (2009)
;(W. Bermel, I. Bertini,L. Duma, I.C. Felli, L. Emsley,  R. Pierattelli,
;   P.R. Vasos, Angew. Chem. Int. Ed. 44, 2-5 (2005) )
;(L. Duma, S. Hediger, A. Lesage & L. Emsley,
;   J. Magn. Reson. 164, 187-195 (2003) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p22=p21*2"
"d11=30m"
"d12=20u"

"d22=4.5m"
"d23=15.0m"


"d0=3u"

"in0=inf1/2"


"DELTA=d0*2+p8-p11"
"DELTA1=d23/2-p12/2"
"DELTA2=d23-d22-p12"


"l0=1"


"spoffs13=bf1*((cnst21/2+cnst22/2)/1000000)-o1"
"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*(cnst22/1000000)-o1"


1 ze 
  d11 pl12:f2
2 d11 do:f2
3 d1 pl3:f3
  d12 cpd2:f2

  (p11:sp23 ph1)
  d23
  (center (p12:sp24 ph1) (p22 ph1):f3 )
  d23 UNBLKGRAD
  (p11:sp25 ph2)

  p16:gp1
  d16

  (p21 ph3):f3
  d0
  (p8:sp13 ph5)
  d0
  (p22 ph1):f3

  if "l0 %2 == 1"
     {
     DELTA
     (p11:sp23 ph1)
     (p21 ph4):f3
     DELTA1
     (p12:sp26 ph1)
     DELTA1
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA1
     (p12:sp26 ph1)
     DELTA1
     (p21 ph7):f3
     }
  else
     {
     DELTA
     (p11:sp23 ph6)
     (p21 ph4):f3
     d22
     (p12:sp26 ph1)
     DELTA2
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA1
     DELTA1
     (p12:sp26 ph1)
     (p21 ph7):f3
     }

  4u BLKGRAD

  go=2 ph31
  d11 do:f2 mc #0 to 2 
     F1I(ip7*2, 2, iu0, 2)
     F1PH(calph(ph3, +90), caldel(d0, +in0))
exit 
  

ph1=0 
ph2=1 
ph3=0 2
ph4=0 0 0 0 2 2 2 2 
ph5=0 0 2 2 
ph6=3
ph7=1 1 1 1 3 3 3 3
ph31=0 2 0 2 2 0 2 0

  
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp13: f1 channel - shaped pulse 180 degree  (adiabatic)
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (Ca off resonance)
;p8 : f1 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (F1 in 2D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCO))                                      [15.0 msec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o1p: CO chemical shift (cnst21)
;l0: flag to switch between inphase and antiphase
;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(N)) =  DW(N)
;nd0: 2
;ns: 8 * n
;ds: >= 32
;td1: number of experiments in F1 * 2
;FnMODE: States-TPPI (or TPPI) in F1
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%

;use gradient files:
;gpnam1: SMSQ10.100



;use AU-program splitcombipap2dsi to process data



;$Id: $
