;c_con_mq
;avance-version (21/09/15)
;CON
;2D sequence with
;   13C detected correlation for triple resonance using 
;      zero and double quantum coherence
;
;      F1(C=O) -> F3(N,HMQC,t1) -> F1(C=O,t2)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;(use parameterset C_CON_MQ)
;
;M. Kostic, S.S. Pochapsky & T.C. Pochapsky,
;   J. Am. Chem. Soc. 124, 9054-9055 (2002)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Delay.incl>


"p22=p21*2"
"d11=30m"
"d12=20u"

"d23=25m"


"d0=3u"

"in0=inf1/2"


"DELTA=d0*2+p12"


"spoffs23=0"
"spoffs24=0"


1 ze 
  d11 pl12:f2
2 d11 do:f2 do:f3
3 d1 pl3:f3
  d12 cpd2:f2

  (p11:sp23 ph1)
  d23
  DELTA

  (p21 ph3):f3
  d0
  (p12:sp24 ph2)
  d0
  (p22 ph1):f3
  DELTA
  (p21 ph4):f3

  d23 pl16:f3
  go=2 ph31 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0))
exit 
  

ph1=0 
ph2=0 0 2 2 
ph3=0 2
ph4=0 0 0 0 2 2 2 2 
ph31=0 2 0 2 2 0 2 0

  
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (F1 in 2D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d23: 1/(2J(NCO))                                      [25 msec]
;o1p: CO chemical shift (cnst21)
;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(N)) =  DW(N)
;nd0: 2
;ns: 8 * n
;ds: >= 32
;td1: number of experiments in F1
;FnMODE: States-TPPI (or TPPI) in F1
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence



;$Id: $
