;c_cosy2_ct
;avance-version (15/02/27)
;CC CT-COSY
;2D sequence with
;   homonuclear COSY transfer
;on/off resonance 13C pulses using hard and shaped pulses
;phase sensitive (t1)
;using constant time in t1
;(use parameterset C_COSY2_CT)
;
;T.E. Machonkin, W.M. Westler & J.L Markley,
;   J. Am. Chem. Soc. 124, 3204-3205 (2002)
;W. Bermel, I. Bertini, I.C. Felli, R. Kuemmerle &
;   R. Pierattelli, J. Am. Chem. Soc. 125, 16423-16429 (2003)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"d11=30m"
"d12=20u"

"d24=5.0m"


"d0=3u"
"d20=d24+d0-p24/2-4u"

"in0=inf1/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA1=d24-p24/2"


1 ze 
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 pl1:f1
  d12 cpd2:f2 cpd3:f3

  (p1 ph3)
  d0
  DELTA1
  (p24:sp7 ph4)
  d20
  4u pl1:f1
  (p1 ph5)

  go=2 ph31
  d11 do:f2 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20))
exit 


ph3=0 2
ph4=0 0 1 1 
ph5=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp7: f2 channel - shaped pulse (180degree refocussing)
;spnam7: Crp60comp.4
;p1 : f1 channel -  90 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse for refocussing
 ;     = 2msec for Crp60comp.4
;d0 : incremented delay (F1 in 2D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d20: decremented delay (F1 in 2D) = d24+d0-p24/2
;d24: 1/(4J(CC)                                        [5 msec]
;cnst21: CO chemical shift (offset, in ppm)
;o1p: C chemical shift
;inf1: 1/SW(C) = 2 * DW(C)
;in0: 1/(2 * SW(C)) =  DW(C)
;nd0: 2
;in20: = in0
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1
;FnMODE: States-TPPI (or TPPI) in F1   td1 max = 2 * d20 / in20
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence



;$Id:$
