;c_hcaconcoca_ia
;avance-version (21/09/15)
;(HCaCO)N(CO)Ca, inter CaN
;2D sequence with
;   13C detected correlation for triple resonance using
;      multiple inept transfer steps
;
;      F2(H) -> F1(Ca) -> F1(C=O) -> F3(N,t1)
;                      -> F1(C=O) -> F1(Ca,t2)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;using IPAP scheme for virtual decoupling
;(use parameterset )
;
;W. Bermel, M. Bruix, I.C. Felli, V. Kumar M. V., R. Pierattelli
;   & S. Serrano, J. Biomol. NMR 55, 231-237 (2013)
;(W. Bermel, I. Bertini, I.C. Felli, R. Peruzzini & R. Pierattelli,
;   Chemphyschem. 11, 689-95 (2010) )
;(W. Bermel, I. Bertini, V. Csizmok, I. C. Felli, R. Pierattelli &
;   P. Tompa, J. Magn. Reson. 198, 275-281 (2009) )
;(;L. Duma, S. Hediger, A. Lesage & L. Emsley,
;   J. Magn. Reson. 164, 187-195 (2003) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p4=p3*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=1.1m"
"d4=1.8m"
"d22=4.5m"
"d23=12.4m"
"d27=13.3m"
"d28=3.6m"


"d0=3u"

"in0=inf1/2"


"DELTA=d0*2+p8"
"DELTA1=d22-d3-p4"
"DELTA2=d28-p12/2"
"DELTA3=d28+d22/2-p12/2"
"DELTA4=d28-d22/2-p12/2"
"DELTA5=d27-d22-p12"
"DELTA6=d27-p12-4u"


"l0=0"


"spoffs13=bf1*((cnst22/2-cnst21/2)/1000000)"
"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*((cnst21-cnst22)/1000000)"
"spoffs28=0"
"spoffs29=bf1*((cnst23-cnst22)/1000000)"


1 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 fq=cnst22(bf ppm):f1
  d12 pl2:f2 pl3:f3
  50u UNBLKGRAD

  (p3 ph1):f2
  d4 
  (center (p12:sp24 ph1) (p4 ph1):f2 )
  d4
  (p3 ph2):f2

  p16:gp1
  d16

  (p11:sp23 ph3)
  d3
  (p4 ph6):f2
  DELTA1
  (p12:sp26 ph6)
  DELTA5
  (p12:sp29 ph1)
  DELTA6
  (p12:sp26 ph1)
  4u
  (p11:sp25 ph1)

  p16:gp2
  d16 fq=cnst21(bf ppm):f1
  4u pl12:f2
  4u cpd2:f2

  (p11:sp23 ph5)
  d23
  (center (p12:sp24 ph1) (p22 ph1):f3 )
  d23
  (p11:sp25 ph2)

  p16:gp3
  d16

  (p21 ph4):f3
  d0
  (p8:sp13 ph6)
  d0
  (p22 ph1):f3
  DELTA
  (p21 ph1):f3

  p16:gp4
  d16

  (p11:sp23 ph2)
  d23
  (center (p12:sp24 ph1) (p22 ph1):f3 )
  d23
  (p11:sp25 ph1)

  p16:gp5
  d16 fq=cnst22(bf ppm):f1
  4u pl16:f3

  if "l0 %4 == 0"
     {
     (p11:sp23 ph1)
     4u
     (p12:sp29 ph1)
     DELTA3
     (p12:sp26 ph1)
     DELTA4
     4u
     (p25:sp28 ph1)
     DELTA3
     (p12:sp26 ph1)
     DELTA4
     }
  if "l0 %4 == 1"
     {
     (p11:sp23 ph7)
     4u
     (p12:sp29 ph1)
     DELTA2
     (p12:sp26 ph1)
     DELTA2
     4u
     (p25:sp28 ph1)
     DELTA2
     (p12:sp26 ph1)
     DELTA2
     }
  if "l0 %4 == 2"
     {
     (p11:sp23 ph7)
     4u
     (p25:sp28 ph1)
     DELTA3
     (p12:sp26 ph1)
     DELTA4
     4u
     (p12:sp29 ph1)
     DELTA3
     (p12:sp26 ph1)
     DELTA4
     }
  if "l0 %4 == 3"
     {
     (p11:sp23 ph8)
     4u
     (p25:sp28 ph1)
     DELTA2
     (p12:sp26 ph1)
     DELTA2
     4u
     (p12:sp29 ph1)
     DELTA2
     (p12:sp26 ph1)
     DELTA2
     }

  4u BLKGRAD

  go=2 ph31 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 
     F1I(iu0, 4)
     F1PH(calph(ph4, +90), caldel(d0, +in0)) 
exit


ph1=0
ph2=1
ph3=0 0 0 0 2 2 2 2
ph4=0 0 2 2
ph5=0 2            
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph7=3
ph8=2
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp13: f1 channel - shaped pulse 180 degree  (adiabatic)
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp28: f1 channel - shaped pulse 180 degree  (Ca on resonance)
;                   sp28 requires higher selectivity than sp24
;sp29: f1 channel - shaped pulse 180 degree  (Cali off resonance)
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f1 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p25: f1 channel - 180 degree shaped pulse (Ca, sp28)
;d0 : incremented delay (F1 in 2D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(HCa))                                      [1.1 msec]
;d4 : 1/(4J(HCa))                                      [1.8 msec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCO))                                      [12.4 msec]
;d27: 1/(2J(CaCb)                                      [13.3 msec]
;d28: 1/(8J(CaCb)                                      [3.6 msec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o1p: CO chemical shift (cnst21)
;l0: flag to switch between inphase and antiphase
;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(N)) = DW(N)
;nd0: 2
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1 * 2
;FnMODE: States-TPPI (or TPPI) in F1
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 30%
;gpz3: 19%
;gpz4: 13%
;gpz5: 23%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100



;use AU-program splitcomb [ipap 4] to process data



;$Id: $
