;c_hcancaco_ia4d
;avance-version (21/09/15)
;Ha(Ca)NCaCO
;4D sequence with
;   13C detected correlation for triple resonance using
;      multiple inept transfer steps
;
;      F2(Ha,t1) -> F1(Ca) -> F3(N,t2)
;                -> F1(Ca,t3) -> F1(C=O,t4)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;phase sensitive (t2)
;phase sensitive (t3)
;using semi-constant time in t1
;using constant time in t3
;using IPAP scheme for virtual decoupling
;(use parameterset )
;
;W. Bermel,  I. Bertini, I.C. Felli, L. Gonnelli, W. Kozminski, A. Piai,
;   R. Pierattelli & J. Stanek, J. Biomol. NMR 53, 293-301 (2012)
;(W. Bermel, I. Bertini,L. Duma, I.C. Felli, L. Emsley,  R. Pierattelli,
;   P.R. Vasos, Angew. Chem. Int. Ed. 44, 2-5 (2005) )
;(L. Duma, S. Hediger, A. Lesage & L. Emsley,
;   J. Magn. Reson. 164, 187-195 (2003) )
;
;$CLASS=HighRes
;$DIM=4D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p4=p3*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=1.1m"
"d4=1.8m"
"d22=4.5m"
"d23=13.0m"


"d32=3u"
"d33=3u"
"d51=3u"
"d31=d4"
"d41=d4+p12+d51"
"d43=d23-p12-4u"

"in31=inf1/2"
"in32=inf2/2"
"in33=inf3/2"

"FACTOR1=d41*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in31 ) { in41 = in31; } else { in41 = INCR1; }"
"if ( INCR1 > in31 ) { in51 = 0; } else { in51=in31-INCR1; }"

"in43=in33"

"td3=tdmax(td3,d43*2,in43)"


"DELTA=d32*2+larger(p4,p8)"
"DELTA1=d23-d3-p4"
"DELTA2=d23-d33-d22-p4-p12"


"l0=1"


"spoffs13=bf1*((cnst21/2+cnst22/2)/1000000)-o1"
"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*((cnst21-cnst22)/1000000)"
"spoffs27=bf1*((cnst22-cnst21)/1000000)"
"spoffs28=0"


"o1_F3=bf1*cnst22/1000000"


1 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 fq=cnst22(bf ppm):f1
  d12 pl2:f2 pl3:f3
  50u UNBLKGRAD

  (p3 ph7):f2
  d31
  (p12:sp24 ph1)
  d51
  (p4 ph1):f2
  d41
  (p3 ph2):f2

  p16:gp1
  d16

  (p11:sp23 ph1)
  d3
  (p4 ph1):f2
  DELTA1
  (center (p25:sp28 ph1) (p22 ph1):f3 )
  d23
  (p11:sp25 ph1)

  p16:gp2
  d16

  (p21 ph3):f3
  d32
  (center  (p8:sp13 ph1) (p4 ph1):f2 )
  d32
  (p22 ph1):f3
  DELTA
  (p21 ph1):f3

  p16:gp3
  d16

  (p11:sp23 ph4)
  d33
  (p4 ph1):f2
  d22
  (p12:sp26 ph1)
  DELTA2
  (center (p25:sp28 ph1) (p22 ph1):f3 )
  d43
  (p12:sp26 ph1)
  4u
  (p11:sp25 ph1)
  
  p16:gp4
  d16 fq=cnst21(bf ppm):f1
  20u pl12:f2 pl16:f3

  if "l0 %2 == 1"
     {
     (p11:sp23 ph5)
     4u
     (p12:sp27 ph1)
     d22
     (p12:sp24 ph1)
     4u
     (p12:sp27 ph1)
     d22 BLKGRAD
     }
  else
     {
     (p11:sp23 ph6)
     4u
     d22*0.5
     (p12:sp27 ph1)
     d22*0.5
     (p12:sp24 ph1)
     4u
     d22*0.5
     (p12:sp27 ph1)
     d22*0.5 BLKGRAD
     }

  go=2 ph31 cpd2:f2 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 
  
#   ifdef LABEL_F1
     F1I(iu0, 2)
#   else

#   ifdef LABEL_F2
     F2I(iu0, 2)
#   else
     F3I(iu0, 2)
#   endif /*LABEL_F2*/

#   endif /*LABEL_F1*/

     F1PH(calph(ph7, +90), caldel(d31, +in31) & caldel(d41, -in41) & caldel(d51, +in51))
     F2PH(calph(ph3, +90), caldel(d32, +in32))
     F3PH(calph(ph4, +90), caldel(d33, +in33) & caldel(d43, -in43))
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=3 3 3 3 3 3 3 3 1 1 1 1 1 1 1 1
ph7=0 0 0 0 2 2 2 2
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp13: f1 channel - shaped pulse 180 degree  (adiabatic)
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp27: f1 channel - shaped pulse 180 degree  (Ca off resonance)
;sp28: f1 channel - shaped pulse 180 degree  (Ca on resonance)
;                   sp28 requires higher selectivity than sp24
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p25: f1 channel - 180 degree shaped pulse (Ca, sp28)
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(HCa))                                      [1.1 msec]
;d4 : 1/(4J(HCa))                                      [1.8 msec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCa))                                      [12.4 msec]
;d31: incremented delay (F1 in 4D) = d4
;d32: incremented delay (F2 in 4D)                     [3 usec]
;d33: incremented delay (F3 in 4D)                     [3 usec]
;d41: decremented delay (F1 in 4D) = d4+p12+d51
;d43: decremented delay (F3 in 4D) = d23-p12-4u
;d51: incremented delay (F1 in 4D)                     [3 usec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o1p: CO chemical shift (cnst21)
;l0: flag to switch between inphase and antiphase
;inf1: 1/SW(Ha) = 2 * DW(Ha)
;inf2: 1/SW(N) = 2 * DW(N)
;inf3: 1/SW(Ca) = 2 * DW(Ca)
;in31: 1/(2 * SW(Ha)) =  DW(Ha)
;nd31: 2
;in32: 1/(2 * SW(N)) =  DW(N)
;nd32: 2
;in33: 1/(2 * SW(Ca)) =  DW(Ca)
;nd33: 2
;in41: = k1 * in31
;in43: = in33
;in51: = (1 - k1) * in31
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1
;td2: number of experiments in F2
;td3: number of experiments in F3 * 2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;FnMODE: States-TPPI (or TPPI) in F3
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 30%
;gpz3: 19%
;gpz4: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100



                                           ;preprocessor-flags-start
;LABEL_F1: to do ipap in F1 start experiment with
;             option -DLABEL_F1 (eda: ZGOPTNS)
;LABEL_F2: to do ipap in F2 start experiment with
;             option -DLABEL_F2 (eda: ZGOPTNS)
                                           ;preprocessor-flags-end



;use AU-program splitcomb [ipap 2] to process data



;$Id: $
