;c_hcancoi_ia3d
;avance-version (21/09/15)
;intra-HCaNCO
;3D sequence with
;   13C detected correlation for triple resonance using 
;      multiple inept transfer steps
;
;      F2(H) -> F1(Ca,t1) -> F3(N,t2) -> F1(C=O,t3)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t1
;using IPAP scheme for virtual decoupling
;(use parameterset C_HCANCOI_IA3D)
;
;W. Bermel, I. Bertini, I.C. Felli, R. Pierattelli & P. Vasos,
;   J. Magn. Reson. 172, 324-328 (2005)
;W. Bermel, I. Bertini,L. Duma, I.C. Felli, L. Emsley,  R. Pierattelli,
;   P.R. Vasos, Angew. Chem. Int. Ed. 44, 3089-3092 (2005)
;(L. Duma, S. Hediger, A. Lesage & L. Emsley,
;   J. Magn. Reson. 164, 187-195 (2003) )
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p4=p3*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=1.1m"
"d4=1.8m"
"d22=4.5m"
"d23=13.3m"
"d27=16.0m"


"d0=d3"
"d10=3u"
"d20=d23-p12-4u"

"in0=inf1/2"
"in10=inf2/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA=d10*2+larger(p4,p8)"
"DELTA1=d22-d0-p4"
"DELTA2=d23-d22-p12"
"DELTA3=d27-d22-p12"
"DELTA4=d27/2-p12/2"


"l0=1"


"spoffs13=bf1*((cnst22/2-cnst21/2)/1000000)"
"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*((cnst21-cnst22)/1000000)"
"spoffs27=bf1*((cnst22-cnst21)/1000000)"


"o1_F1=bf1*cnst22/1000000"


aqseq 312


1 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 fq=cnst22(bf ppm):f1
  d12 pl2:f2 pl3:f3
  50u UNBLKGRAD

  (p3 ph1):f2
  d4 
  (center (p12:sp24 ph1) (p4 ph1):f2 )
  d4
  (p3 ph2):f2

  p16:gp1
  d16

  (p11:sp23 ph3)
  d0
  (p4 ph6):f2
  DELTA1
  (p12:sp26 ph6)
  DELTA2
  (center (p12:sp24 ph1) (p22 ph1):f3 )
  d20
  (p12:sp26 ph1)
  4u
  (p11:sp25 ph2)

  p16:gp2
  d16 fq=cnst21(bf ppm):f1

  (p21 ph4):f3
  d10
  (center (p8:sp13 ph6) (p4 ph6):f2 )
  d10
  (p22 ph1):f3
  DELTA
  (p21 ph1):f3

  p16:gp3
  d16

  if "l0 %2 == 1"
     {
     (p11:sp23 ph5)
     d22
     (p12:sp27 ph1)
     DELTA3
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA4
     DELTA4 pl12:f2 pl16:f3 
     (p12:sp27 ph1)
     }
  else
     {
     (p11:sp23 ph7)
     DELTA4
     (p12:sp27 ph1)
     DELTA4
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA4
     (p12:sp27 ph1)
     DELTA4 pl12:f2 pl16:f3 
     }
  
  4u BLKGRAD

  go=2 ph31 cpd2:f2 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 
     F1I(iu0, 2)
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20)) 
     F2PH(calph(ph4, +90), caldel(d10, +in10))
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=0 0 0 0 2 2 2 2
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph7=1 1 1 1 3 3 3 3
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp13: f1 channel - shaped pulse 180 degree  (adiabatic)
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp27: f1 channel - shaped pulse 180 degree  (Ca off resonance)
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (F1 in 3D) = d3
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(HCa))                                      [1.1 msec]
;d4 : 1/(4J(HCa))                                      [1.8 msec]
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d23-p12-4u
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCa)) and 1/(2J(CaCb))                     [13.3 msec]
;d27: 1/(4J(NCO))                                      [16.0 msec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o1p: CO chemical shift (cnst21)
;l0: flag to switch between inphase and antiphase
;inf1: 1/SW(Ca) = 2 * DW(Ca)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Ca)) =  DW(Ca)
;nd0: 2
;in10: 1/(2 * SW(N)) =  DW(N)
;nd10: 2
;in20: = in0
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1 * 2
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1   td1 max = 4 * d20 / in20
;FnMODE: States-TPPI (or TPPI) in F2
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2 : gp 3
;                         50 :   30 :   19

;for z-only gradients:
;gpz1: 50%
;gpz2: 30%
;gpz3: 19%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;use AU-program splitcomb [ipap 2] (F1) to process data



;$Id: $
