;c_hcbca_ia3d
;avance-version (21/09/15)
;HCbCa
;3D sequence with
;   13C detected correlation for triple resonance using
;      multiple inept transfer steps
;
;      F2(Ha/b,t1) -> F1(Ca/b,t2) -> F1(Ca,t3)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;phase sensitive (t2)
;using semi-constant time in t1
;using constant time in t2
;using DIPAP scheme for virtual decoupling
;(use parameterset C_HCBCA_IA3D)
;
;W. Bermel, I. Bertini,L. Duma, I.C. Felli, L. Emsley,  R. Pierattelli,
;   P.R. Vasos, Angew. Chem. Int. Ed. 44, 3089-3092 (2005)
;(L. Duma, S. Hediger, A. Lesage & L. Emsley,
;   J. Magn. Reson. 164, 187-195 (2003) )
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p4=p3*2"
"d11=30m"
"d12=20u"

"d3=1.1m"
"d4=1.8m"
"d22=4.5m"
"d25=4.0m"
"d27=3.6m"


"d0=d4"
"d10=3u"
"d20=3u"
"d28=d4+p12+d20"
"d30=d25+d10-p12-4u"

"in0=inf1/2"
"in10=inf2/2"

"FACTOR1=d28*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in0 ) { in20 = 0; } else { in20=in0-INCR1; }"
"if ( INCR1 > in0 ) { in28 = in0; } else { in28 = INCR1; }"

"in30=in10"

"td2=tdmax(td2,d30*2,in30)"


"DELTA1=d25-p12-d3-p4"
"DELTA2=d27-p12/2"
"DELTA3=d27+d22/2-p12/2"
"DELTA4=d27-d22/2-p12/2"


"l0=0"


"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*((cnst21-cnst23)/1000000)"
"spoffs27=bf1*((cnst21-cnst22)/1000000)"
"spoffs28=0"
"spoffs29=bf1*((cnst23-cnst22)/1000000)"


"cnst62=-(bf2*cnst20-(o2*1000000))"
"cnst63=(bf2*cnst20-(o2*1000000))*(inf1/1000000)*360.0"


"TAU9=abs(cnst62+cnst63)/100000"


"o1_F1=bf2*cnst20/1000000"
"o1_F2=bf1*cnst23/1000000"


aqseq 321


1 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 fq=cnst23(bf ppm):f1
  d12 pl2:f2 cpd3:f3
  50u UNBLKGRAD

  (p3 ph3):f2
  d0 
  (p12:sp24 ph6)
  d20
  (p4 ph1):f2
  d28
  (p3 ph2):f2

  p16:gp1
  d16

  (p11:sp23 ph4)
  d10
  (p12:sp26 ph6)
  d3
  (p4 ph6):f2
  DELTA1
  (p12:sp24 ph1)
  d30
  (p12:sp26 ph1)
  4u
  (p11:sp25 ph1)

  d25
  (p12:sp24 ph1)
  d25
  (p11:sp23 ph2)

  p16:gp2
  d16 fq=cnst22(bf ppm):f1

  if "l0 %4 == 0"
     {
     (p11:sp23 ph5)
     4u
     (p12:sp29 ph1)
     DELTA2
     (p12:sp27 ph1)
     DELTA2
     4u
     (p25:sp28 ph1)
     DELTA2
     (p12:sp27 ph1)
     DELTA2 pl12:f2
     }
  if "l0 %4 == 1"
     {
     (p11:sp23 ph7)
     4u
     (p12:sp29 ph1)
     DELTA3
     (p12:sp27 ph1)
     DELTA4
     4u
     (p25:sp28 ph1)
     DELTA3
     (p12:sp27 ph1)
     DELTA4 pl12:f2
     }
  if "l0 %4 == 2"
     {
     (p11:sp23 ph8)
     4u
     (p25:sp28 ph1)
     DELTA2
     (p12:sp27 ph1)
     DELTA2
     4u
     (p12:sp29 ph1)
     DELTA2
     (p12:sp27 ph1)
     DELTA2 pl12:f2
     }
  if "l0 %4 == 3"
     {
     (p11:sp23 ph5)
     4u
     (p25:sp28 ph1)
     DELTA3
     (p12:sp27 ph1)
     DELTA4
     4u
     (p12:sp29 ph1)
     DELTA3
     (p12:sp27 ph1)
     DELTA4 pl12:f2
     }

  4u BLKGRAD

  go=2 ph31 cpd2:f2
  d11 do:f2 do:f3 mc #0 to 2 

#   ifdef LABEL_F1
     F1I(iu0, 4)
#   else
     F2I(iu0, 4)
#   endif /*LABEL_F1*/

     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, +in20) & caldel(d28, -in28) & calph(ph3, cnst63)) 
     F2PH(calph(ph4, +90), caldel(d10, +in10) & caldel(d30, -in30))

TAU9
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=0 0 0 0 2 2 2 2
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph7=1 1 1 1 3 3 3 3
ph8=3 3 3 3 1 1 1 1
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp27: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp28: f1 channel - shaped pulse 180 degree  (Ca on resonance)
;                   sp28 requires higher selectivity than sp24
;sp29: f1 channel - shaped pulse 180 degree  (Cali off resonance)
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p25: f1 channel - 180 degree shaped pulse (Ca, sp28)
;d0 : incremented delay (F1 in 3D) = d4
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(HCa))                                      [1.1 msec]
;d4 : 1/(4J(HCa))                                      [1.8 msec]
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: incremented delay (F1 in 3D)                     [3 usec]
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d25: 1/(8J'(CaCb))                                    [4.0 msec]
;d27: 1/(8J(CaCb))                                     [3.6 msec]
;d28: decremented delay (F1 in 3D) = d4+p12+d20
;d30: decremented delay (F2 in 3D) = d25+d10-p12-4u
;cnst20: H(ali) chemical shift (offset, in ppm)
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;cnst62: offset for Hali region (Hz)
;cnst63: additional phase increment to center Hali region
;o1p: Calpha chemical shift (cnst22)
;l0: flag to switch between inphase and antiphase
;inf1: 1/SW(Hab) = 2 * DW(Hab)
;inf2: 1/SW(Cab) = 2 * DW(Cab)
;in0: 1/(2 * SW(Hab)) =  DW(Hab)
;nd0: 2
;in10: 1/(2 * SW(Cab)) =  DW(Cab)
;nd10: 2
;in20: = (1 - k) * in0
;in28: = k * in0
;in30: = in10
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2   td2 max = 2 * d30 / in30
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 30%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



                                          ;preprocessor-flags-start
;LABEL_F1: to do ipap in F1 start experiment with
;             option -DLABEL_F1 (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;use AU-program splitcomb [ipap 4]  to process data



;$Id: $
