;c_hcbcanco_ia3d_pro
;avance-version (21/09/15)
;(H)CbCaNCO
;3D sequence with
;   13C detected correlation for triple resonance using 
;      multiple inept transfer steps
;
;      F2(Ha/b) -> F1(Ca/b,t1) -> F1(Ca)
;               -> F3(N,t2) -> F1(C=O,t3)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t1
;using constant time in t2
;using IPAP scheme for virtual decoupling
;using selective N pulse for Pro
;(use parameterset )
;
;M.G. Murrali, A. Piai, W. Bermel, I.C. Felli & R. Pierattelli,
;   ChemBioChem 19, 1625-1629 (2018)
;W. Bermel, I. Bertini, V. Csizmok, I. C. Felli, R. Pierattelli & 
;   P. Tompa, J. Magn. Reson. 198, 275-281 (2009)
;(W. Bermel, I. Bertini, I.C. Felli, R. Kuemmerle
;   & R. Pierattelli, J. Magn. Reson. 178, 56-64 (2006) )
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p4=p3*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=1.1m"
"d4=1.8m"
"d22=4.5m"
"d23=11.0m"
"d25=4.0m"
"d27=16.0m"


"d0=3u"
"d10=d23"
"d20=d25-p12-4u"
"d30=d27-larger(p12,p59)/2"

"in0=inf1/2"
"in10=inf2/2"

"in20=in0"
"in30=in10"

"td1=tdmax(td1,d20*2,in20)"
"td2=tdmax(td2,d30*2,in30)"


"DELTA1=d25-d0-larger(p12,p22)-d3-p4"
"DELTA2=d27-d10-p12-larger(p12,p59)/2"
"DELTA3=d27/2-p12/2"
"DELTA4=d27-d22-p12"


"l0=1"


"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*((cnst21-cnst23)/1000000)"
"spoffs27=bf1*((cnst22-cnst21)/1000000)"


"o1_F1=bf1*cnst23/1000000"


aqseq 321


1 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d12 fq=cnst23(bf ppm):f1
  d1
  d12 pl2:f2 pl3:f3
  50u UNBLKGRAD

  (p3 ph1):f2
  d4
  (center (p12:sp24 ph1) (p4 ph1):f2 )
  d4
  (p3 ph2):f2

  p16:gp1
  d16

  (p11:sp23 ph3)
  d0
  (center (p12:sp26 ph6) (p22 ph1):f3 )
  d3
  (p4 ph1):f2
  DELTA1
  (p12:sp24 ph1)
  d20
  (p12:sp26 ph1)
  4u
  (p11:sp25 ph1)

  d23
  (center (p12:sp24 ph1) (p22 ph1):f3 )
  d23 pl12:f2
  (p11:sp23 ph1)

  p16:gp2
  d16 fq=cnst21(bf ppm):f1
  20u cpd2:f2

  (p21 ph4):f3
  d10
  (p12:sp27 ph6)
  DELTA2
  (center (p12:sp24 ph6) (p59:sp46 ph1):f3 )
  d30 pl3:f3
  (p21 ph1):f3

  4u do:f2
  p16:gp3
  d16
  20u cpd2:f2

  if "l0 %2 == 1"
     {
     (p11:sp23 ph5)
     DELTA3
     (p12:sp27 ph1)
     DELTA3
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA3
     (p12:sp27 ph1)
     DELTA3 pl16:f3
     }
  else
     {
     (p11:sp23 ph7)
     d22
     (p12:sp27 ph1)
     DELTA4
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA3
     DELTA3 pl16:f3
     (p12:sp27 ph1)
     }
  
  4u BLKGRAD

  go=2 ph31 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 

#   ifdef LABEL_F1
     F1I(iu0, 2)
#   else
     F2I(iu0, 2)
#   endif /*LABEL_F1*/

     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20)) 
     F2PH(calph(ph4, +90), caldel(d10, +in10) & caldel(d30, -in30))
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=0 0 0 0 2 2 2 2
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph7=3 3 3 3 1 1 1 1
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp27: f1 channel - shaped pulse 180 degree  (Ca off resonance)
;sp46: f3 channel - shaped pulse 180 degree  (N, selective for Pro)
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p59: f3 channel - 180 degree shaped pulse (N, selective for Pro)
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(HCa))                                      [1.1 msec]
;d4 : 1/(4J(HCa))                                      [1.8 msec]
;d10: incremented delay (F2 in 3D) = d23
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d25-p12-4u
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCa))                                      [11.0 msec]
;d25: 1/(8J'(CaCb))                                    [4.0 msec]
;d27: 1/(4J(NCO))                                      [16.0 msec]
;d30: decremented delay (F2 in 3D) = d27-larger(p12,p59)/2
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o1p: CO chemical shift (cnst21)
;l0: flag to switch between inphase and antiphase
;inf1: 1/SW(Ca) = 2 * DW(Ca)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Ca)) =  DW(Ca)
;nd0: 2
;in10: 1/(2 * SW(N)) =  DW(N)
;nd10: 2
;in20: = in0
;in30: = in10
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 30%
;gpz3: 19%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



                                          ;preprocessor-flags-start
;LABEL_F1: to do ipap in F1 start experiment with
;             option -DLABEL_F1 (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;use AU-program splitcomb [ipap 2] to process data



;$Id: $
