;c_hcccon_ia3d2
;avance-version (21/09/15)
;H(CCCO)N
;3D sequence with
;   13C detected correlation for triple resonance using
;      multiple inept transfer steps and
;      C-C FLOPSY16 spinlock
;
;      F1(Cali,t1) -> F1(Ca) -> F1(C=O)
;                            -> F3(N,t2) -> F1(C=O,t3)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;phase sensitive (t2)
;using semi-constant time in t1
;using IPAP scheme for virtual decoupling
;(use parameterset )
;
;W. Bermel, I. Bertini, I.C. Felli, R. Kuemmerle
;   & R. Pierattelli, J. Magn. Reson. 178, 56-64 (2006)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p4=p3*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=0.95m"
"d4=1.8m"
"d22=4.5m"
"d23=12.5m"


"d0=d4"
"d10=3u"
"d28=3u"
"d20=d4+p12+d28"

"in0=inf1/2"
"in10=inf2/2"

"FACTOR1=d20*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in0 ) { in20 = in0; } else { in20 = INCR1; }"
"if ( INCR1 > in0 ) { in28 = 0; } else { in28=in0-INCR1; }"


"DELTA=d10*2+p8"
"DELTA3=d23-d22-p12"
"DELTA4=d23-p12-4u"
"DELTA5=d23/2-p12/2"


"FACTOR2=(d9/(p6*188.448))"
"l1=FACTOR2"


"l0=1"


"spoffs13=bf1*((cnst22/2-cnst21/2)/1000000)"
"spoffs22=bf1*((cnst21-cnst22)/1000000)"
"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs27=bf1*((cnst22-cnst21)/1000000)"
"spoffs28=0"


"cnst62=-(bf2*cnst20-(o2*1000000))"
"cnst63=(bf2*cnst20-(o2*1000000))*(inf1/1000000)*360.0"


"TAU9=abs(cnst62+cnst63)/100000"


"o1_F1=bf2*cnst20/1000000"
"o1_F2=bf1*cnst23/1000000"


aqseq 321


1 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 fq=cnst23(bf ppm):f1
  d12 pl2:f2 pl3:f3
  50u UNBLKGRAD

  (p3 ph3):f2
  d0
  (p12:sp24 ph1)
  d28
  (p4 ph1):f2
  d20
  (p3 ph2):f2

  (p11:sp23 ph2)
  d3
  (center (p12:sp24 ph1) (p4 ph1):f2 )
  d3
  (p11:sp25 ph1)

  p19:gp1
  d16 pl10:f1
						;begin FLOPSY16
4 p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11
  lo to 4 times l1
						;end FLOPSY16

  p19:gp2
  d16 fq=cnst22(bf ppm):f1
  20u pl12:f2
  20u cpd2:f2

  (p11:sp23 ph1)
  d22
  (p12:sp22 ph1)
  4u
  (p25:sp28 ph1)
  d22
  (p12:sp22 ph1)
  4u
  (p11:sp25 ph2)

  4u do:f2
  p16:gp3
  d16 fq=cnst21(bf ppm):f1
  20u cpd2:f2

  (p11:sp23 ph1)
  d22
  (p12:sp27 ph1)
  DELTA3
  (center (p12:sp24 ph1) (p22 ph1):f3 )
  DELTA4
  (p12:sp27 ph1)
  4u
  (p11:sp25 ph1)

  4u do:f2
  p16:gp4
  d16 cpd2:f2

  (p21 ph4):f3
  d10
  (p8:sp13 ph6)
  d10
  (p22 ph1):f3
  DELTA
  (p21 ph5):f3

  if "l0 %2 == 1"
     {
     (p11:sp23 ph1)
     DELTA5
     (p12:sp27 ph1)
     DELTA5
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA5
     (p12:sp27 ph1)
     DELTA5 pl16:f3
     }
  else
     {
     (p11:sp23 ph7)
     d22
     (p12:sp27 ph1)
     DELTA3
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA5
     DELTA5 pl16:f3
     (p12:sp27 ph1)
     }

  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 

#   ifdef LABEL_F1
     F1I(iu0, 2)
#   else
     F2I(iu0, 2)
#   endif /*LABEL_F1*/

     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20) & caldel(d28, +in28) & calph(ph3, cnst63))
     F2PH(calph(ph4, +90), caldel(d10, +in10))

TAU9
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 2 2 
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=0 0 0 0 2 2 2 2
ph7=3

ph11=(720) 0
ph12=(720) 90
ph13=(720) 135
ph14=(720) 630
ph15=(720) 45

ph21=(720) 360
ph22=(720) 450
ph23=(720) 495
ph24=(720) 270
ph25=(720) 405

ph31=0 2 2 0 0 2 2 0 2 0 0 2 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp13: f1 channel - shaped pulse 180 degree  (adiabatic)
;sp22: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp27: f1 channel - shaped pulse 180 degree  (Ca off resonance)
;sp28: f1 channel - shaped pulse 180 degree  (Ca on resonance)
;                   sp28 requires higher selectivity than sp24
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p6 : f1 channel -  90 degree low power pulse
;p8 : f1 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p19: gradient pulse 2                                 [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p25: f1 channel - 180 degree shaped pulse (Ca, sp28)
;d0 : incremented delay (F1 in 3D) = d4
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(HCa))                                      [950 usec]
;d4 : 1/(4J(HCa))                                      [1.8 msec]
;d9 : TOCSY mixing time                                [12 msec]
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery            [150 usec]
;d20: decremented delay (F1 in 3D) = d4+p12+d28
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCO))                                      [12.5 msec]
;d28: incremented delay (F1 in 3D)                     [3 usec]
;cnst20: H(ali) chemical shift (offset, in ppm)
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;cnst62: offset for Hali region (Hz)
;cnst63: additional phase increment to center Hali region
;o1p: CO chemical shift (cnst21)
;l0: flag to switch between inphase and antiphase
;l1: loop for FLOPSY16 cycle: ((p6*188.448) * l1) = mixing time
;inf1: 1/SW(Hali) = 2 * DW(Hali)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Hali)) =  DW(Hali)
;nd0: 2
;in10: 1/(2 * SW(N)) =  DW(N)
;nd10: 2
;in20: = k * in0
;in28: = (1 - k) * in0
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 60%
;gpz2: 50%
;gpz3: 19%
;gpz4: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_F2: to do ipap in F2 start experiment with
;             option -DLABEL_F2 (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;use AU-program splitcomb [ipap 2] to process data



;Processing

;SR(F1): 1/4 SWH(F1)



;$Id: $
