;c_hccflopsy16_3d
;avance-version (21/09/15)
;HCC-TOCSY
;3D sequence with
;   13C detected correlation using inept transfer and
;      C-C FLOPSY16 spinlock
;
;      F2(H,t1) -> F1(C,t2) -> F1(C,t3)
;
;on/off resonance 13C pulses using hard and shaped pulses
;phase sensitive (t1)
;phase sensitive (t2)
;using semi-constant time in t1
;(use parameterset C_HCCFLOPSY16_3D)
;
;Z. Serber, C. Richter & V. Doetsch, 
;   ChemBioChem. 2, 247-251 (2001)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d11=30m"

"d3=950u"
"d4=1.8m"


"p29=300u"

"d16=150u"


"d0=d4"
"d10=3u"
"d20=3u"
"d28=d4+p12+d20+4u"

"in0=inf1/2"
"in10=inf2/2"

"FACTOR1=d28*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in0 ) { in20 = 0; } else { in20=in0-INCR1; }"
"if ( INCR1 > in0 ) { in28 = in0; } else { in28 = INCR1; }"


"DELTA1=d3/2-p29-d16"
"DELTA2=p22+p4+d10*2+4u"


"FACTOR2=(d9/(p6*188.448))"
"l1=FACTOR2"


"spoffs24=0"
"spoffs26=bf1*(cnst21/1000000)-o1"


"cnst62=-(bf2*cnst20-(o2*1000000))"
"cnst63=(bf2*cnst20-(o2*1000000))*(inf1/1000000)*360.0"


"TAU9=abs(cnst62+cnst63)/100000"


"o1_F1=bf2*cnst20/1000000"


aqseq 321


1 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d1 pl0:f1 pl2:f2 pl3:f3
  50u UNBLKGRAD

  (p3 ph3):f2
  d0
  (p12:sp24 ph1):f1
  d20
  4u pl1:f1
  (p4 ph1):f2
  d28
  (p3 ph2):f2

  p16:gp1
  d16 pl1:f1

  (p1 ph4):f1
  d10
  (p22 ph1):f3
  4u
  p29:gp2
  d16
  DELTA1 pl0:f1
  (p12:sp26 ph1):f1
  4u
  p29:gp2
  d16
  DELTA1 pl1:f1
  (p4 ph1):f2
  d10
  (p2 ph1):f1
  DELTA2
  p29:gp2
  d16
  DELTA1
  (p12:sp26 ph1):f1
  4u
  p29:gp2
  d16
  DELTA1 pl1:f1

  (p1 ph1):f1

  p16:gp3
  d16 pl10:f1
						;begin FLOPSY16
4 p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph21
  p6*1.067 ph22
  p6*1.822 ph23
  p6*1.767 ph24
  p6*1.444 ph25
  p6*1.767 ph24
  p6*1.822 ph23
  p6*1.067 ph22
  p6*0.511 ph21

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11

  p6*0.511 ph11
  p6*1.067 ph12
  p6*1.822 ph13
  p6*1.767 ph14
  p6*1.444 ph15
  p6*1.767 ph14
  p6*1.822 ph13
  p6*1.067 ph12
  p6*0.511 ph11
  lo to 4 times l1
						;end FLOPSY16

  p16:gp4
  d16 pl1:f1 pl12:f2 pl16:f3
  4u BLKGRAD
  (p1 ph5):f1

  go=2 ph31 cpd2:f2 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, +in20) & caldel(d28, -in28) & calph(ph3, cnst63))
     F2PH(calph(ph4, +90), caldel(d10, +in10))

TAU9
exit


ph1=0
ph2=1
ph3=0 2
ph4=1 1 1 1 3 3 3 3
ph5=0 0 2 2 

ph11=(720) 0
ph12=(720) 90
ph13=(720) 135
ph14=(720) 630
ph15=(720) 45

ph21=(720) 360
ph22=(720) 450
ph23=(720) 495
ph24=(720) 270
ph25=(720) 405

ph31=0 2 2 0 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp26: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p6 : f1 channel -  90 degree low power pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p22: f3 channel - 180 degree high power pulse
;p29: gradient pulse 3                                 [300 usec]
;d0 : incremented delay (F1 in 3D) = d4
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(CH))                                       [950 usec]
;d4 : 1/(4J(CH))                                       [1.8 msec]
;d9 : TOCSY mixing time
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d20: incremented delay (F1 in 3D)                     [3 usec]
;d28: decremented delay (F1 in 3D) = d4+p12+d20
;cnst20: H(ali) chemical shift (offset, in ppm)
;cnst21: CO chemical shift (offset, in ppm)
;cnst62: offset for Hali region (Hz)
;cnst63: additional phase increment to center Hali region
;o1p: Caliphatic chemical shift (cnst23)
;l1: loop for FLOPSY16 cycle: ((p6*188.448) * l1) = mixing time
;inf1: 1/SW(H) = 2 * DW(H)
;inf2: 1/SW(Cali) = 2 * DW(Cali)
;in0: 1/(2 * SW(H)) =  DW(H)
;nd0: 2
;in10: 1/(2 * SW(Cali)) =  DW(Cali)
;nd10: 2
;in20: = (1 - k) * in0
;in28: = k * in0
;ns: 8 * n
;ds: >= 32
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 16%
;gpz2: 16%
;gpz3: 60%
;gpz4: 50%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.50
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100



;$Id: $
