;cbcaconhgpwg3d.2
;avance-version (21/09/15)
;CBCACONH
;3D sequence with
;   inverse correlation for triple resonance using inept transfer steps 
;
;      F1(H) -> F2(Caliph.,t1 -> Ca) -> F2(C=O) -> F3(N,t2) -> F1(H,t3)
;
;amino acid selection:
;   no option     aa without aliphatic Cg (Ala, Asn, Asp, Cys, Gly, Ser)
;   LABEL_CO      aa without aliphatic or CO Cg (Ala, Cys, Ser)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t1
;using constant time in t2
;water suppression using watergate sequence
;(use parameterset CBCACONHGPWG3D.2)
;
;(R.P. Barnwal, A.K. Rout, H.S. Atreya & K.V.R. Chary,
;   J. Biomol. NMR 41, 191-197 (2008))
;(S. Grzesiek & A. Bax, J. Biomol. NMR 3, 185-204 (1993))
;(D.R. Muhandiram & L.E. Kay, J. Magn. Reson. B 103, 203-216 (1994))
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include<Avance.incl>
#include<Grad.incl>
#include<Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=1.1m"
"d4=1.7m"
"d21=5.5m"
"d22=4.5m"
"d23=4.0m"
"d26=2.3m"
"d27=12.4m"
"d28=7.2m"


"d0=3u"
"d10=d27/2-p14/2"
"d29=d27/2-p14/2-p26-d21-4u"
"d20=d28-p14-4u"
"d30=d27/2-p14/2"

"in0=inf1/2"
"in10=inf2/4"

"in20=in0"
"in29=in10"
"in30=in10"

"td1=tdmax(td1,d20*2,in20)"
"td2=tdmax(td2,d30*2,in30)"


"DELTA1=d22-d3-p2"
"DELTA3=d27-d22+4u"
"DELTA4=d26-p16-d16-p11-12u"
"DELTA5=d3-d0-p22"
"DELTA6=d28-d22-p14"

"TAU=p14"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst23)/1000000)"
"spoffs7=bf2*((cnst22-cnst21)/1000000)"
"spoffs8=0"


"o1_F1=bf2*cnst23/1000000"


aqseq 321


1 ze
  d11 pl16:f3
2 d11 do:f3
3 d11 fq=cnst23(bf ppm):f2
  d1
  50u UNBLKGRAD
  d12 pl1:f1 pl3:f3

  (p1 ph1):f1
  d4
  (center (p2 ph1):f1 (p14:sp3 ph1):f2 )
  d4
  (p1 ph2):f1

  (p13:sp2 ph3):f2
  d0
  (p22 ph1):f3
  DELTA5
  (p2 ph10)
  DELTA1 pl19:f1

#   ifdef LABEL_CO
  (p14:sp5 ph1):f2
#   else
  TAU
#   endif /*LABEL_CO*/

  DELTA6
  (p14:sp3 ph1):f2
  d20

#   ifdef LABEL_CO
  (p14:sp5 ph1):f2
#   else
  TAU
#   endif /*LABEL_CO*/

  4u
  (p13:sp8 ph1):f2

  4u cpds1:f1 ph2
  (p14:sp5 ph1):f2
  d23
  (p14:sp3 ph1):f2
  4u
  (p14:sp5 ph1):f2
  d23
  (p13:sp2 ph1):f2

  4u do:f1
  (p26 ph9):f1
  p16:gp1
  d16 fq=cnst21(bf ppm):f2
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph4):f2
  d22
  (p14:sp7 ph1):f2
  DELTA3
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d27
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u do:f1
  (p26 ph7):f1
  4u
  p16:gp2
  d16
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph5):f3
  d30
  (p14:sp7 ph1):f2
  d30
  (center (p14:sp3 ph1):f2 (p22 ph8):f3 )
  d10
  (p14:sp7 ph1):f2
  d29
  4u do:f1
  (p26 ph7):f1
  d21
  (p21 ph1):f3

  p16:gp3
  d16
  (p11:sp1 ph6):f1
  4u
  4u pl1:f1

  (p1 ph1) 
  4u
  p16:gp4
  d16
  DELTA4
  (p11:sp1 ph6):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph6):f1
  4u
  DELTA4
  p16:gp4
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20)) 
     F2PH(calph(ph5, +90), caldel(d10, +in10) & caldel(d29, +in29) & caldel(d30, -in30))
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph5=0 0 2 2
ph6=2
ph7=3
ph8=0 0 0 0 2 2 2 2
ph9=2
ph10=0 0 2 2
ph31=0 2 2 0 0 2 2 0 2 0 0 2 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(CH))                                       [1.1 msec]
;d4 : 1/(4J(CH))                                       [1.7 msec]
;d10: incremented delay (F2 in 3D) =  d27/2-p14/2
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d28-p14-4u
;d21: 1/(2J(NH))                                       [5.5 msec]
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J'(COCa)) and 1/(8J(CaCb)                     [4.0 msec]
;d26: 1/(4J(NH))                                       [2.3 msec]
;d27: 1/(4J(NCO)                                       [12.4 msec]
;d28: 1/(4J(CaCb)                                      [7.2 msec]
;d29: incremented delay (F2 in 3D) = d27/2-p14/2-p26-d21-4u
;d30: decremented delay (F2 in 3D) = d27/2-p14/2
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o2p: Caliphatic chemical shift (cnst23)
;inf1: 1/SW(Cali) = 2 * DW(Cali)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Cali)) =  DW(Cali)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in20: = in0
;in29: = in10
;in30: = in10
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1       td1 max = 2 * d20 / in20
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 40%
;gpz3: 60%
;gpz4: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100



;$Id: $
