;ccaconhgp2h3d
;avance-version (21/09/15)
;CCACONH
;3D sequence with
;   inverse correlation for triple resonance using inept transfer steps 
;
;      F2(Caliph.,t1 -> Ca) -> F2(C=O) -> F3(N,t2) -> F1(H,t3)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho gradient selection (t2)
;using constant time in t1
;using constant time in t2
;starting with C-13 magnetization
;with H-2 decoupling - requires lockswitch unit or BSMS 2H-TX board
;with suppression of protonated carbons
;(use parameterset CCACONHGP2H3D)
;
;S. Grzesiek & A. Bax, J. Biomol. NMR 3, 185-204 (1993)
;(D.R. Muhandiram & L.E. Kay, J. Magn. Reson. B 103, 203-216 (1994))
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include<Avance.incl>
#include<Grad.incl>
#include<Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d4=1.7m"
"d21=12.4m"			;T N
"d22=3.6m"			;T C
"d23=3.6m"			;tau c
"d24=4.4m"			;tau d
"d25=5.5m"			;tau f
"d26=2.3m"			;tau g
"d27=12.4m"			;tau e


"d0=3u"
"d10=d21/2-p14/2"
"d29=d21/2-p14/2-p26-d25-4u"
"d20=d22+d0-p14-4u"
"d30=d21/2-p14/2"

"in0=inf1/2"
"in10=inf2/4"

"in20=in0"
"in29=in10"
"in30=in10"

"td1=tdmax(td1,d20*2,in20)"
"td2=tdmax(td2,d30*2,in30)"


"DELTA1=d22-larger(p14,p22)-d4-p2"
"DELTA2=d23-p14"
"DELTA3=d27-d24+4u"
"DELTA4=d25-p16-d16-4u"
"DELTA5=p16+d16+8u"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst23)/1000000)"
"spoffs7=bf2*((cnst22-cnst21)/1000000)"
"spoffs8=0"


"o1_F1=bf2*cnst23/1000000"


aqseq 321


1 ze
  d11 LOCKDEC_ON
  50u LOCKH_ON
  d11 H2_PULSE
  d11 pl16:f3 pl17:f4

2 d11 do:f3
3 d11 fq=cnst23(bf ppm):f2 H2_LOCK
  6m LOCKH_OFF
  d1
  50u LOCKH_ON
  d12 H2_PULSE
  d12 pl1:f1 pl0:f2 pl3:f3

  (p2 ph1)
  20u cpd4:f4

  (p13:sp2 ph3):f2
  d0
  (center (p14:sp5 ph1):f2 (p22 ph1):f3 )
  d4
  (p2 ph1) 
  DELTA1
  (p14:sp3 ph1):f2
  d20
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u
  (p14:sp5 ph1):f2
  DELTA2
  (p14:sp3 ph1):f2
  4u
  (p14:sp5 ph1):f2
  DELTA2 UNBLKGRAMP
  (p13:sp2 ph1):f2

  4u do:f4
  p16:gp1
  d16 fq=cnst21(bf ppm):f2

  (p13:sp2 ph4):f2
  d24
  (p14:sp7 ph1):f2
  DELTA3
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d27 pl19:f1
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph1):f2

  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph1):f3
  d30
  (p14:sp7 ph1):f2
  d30
  (center (p14:sp3 ph1):f2 (p22 ph8):f3 )
  d10
  (p14:sp7 ph1):f2
  d29
  4u do:f1
  (p26 ph7):f1
  4u
  p16:gp2*EA
  d16 
  DELTA4 pl1:f1

  (center (p1 ph1):f1 (p21 ph5):f3 )
  d26
  (center (p2 ph1):f1 (p22 ph1):f3 )
  d26
  (center (p1 ph2):f1 (p21 ph6):f3 )
  d26
  (center (p2 ph1):f1 (p22 ph1):f3 )
  d26
  (p1 ph1):f1

  DELTA5
  (p2 ph1):f1
  4u
  p16:gp3
  d16 pl16:f3
  4u BLKGRAMP
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20)) 
     F2EA(calgrad(EA) & calph(ph5, +180), caldel(d10, +in10) & caldel(d29, +in29) & caldel(d30, -in30))
     
  d11 H2_LOCK
  d11 LOCKH_OFF
  d11 LOCKDEC_OFF

exit


ph1=0
ph2=1
ph3=1 3
ph4=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph5=0 0 2 2
ph6=3 3 1 1
ph7=3
ph8=0 0 0 0 2 2 2 2
ph9=2
ph31=0 2 2 0 0 2 2 0 2 0 0 2 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl17: f4 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CH)) - tau a                               [1.7 msec]
;d10: incremented delay (F2 in 3D) =  d21/2-p14/2
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d22+d0-p14-4u
;d21: T(N)                                             [12.4 msec]
;d22: T(C)                                             [3.6 msec]
;d23: tau c                                            [3.6 msec]
;d24: tau d                                            [4.4 msec]
;d25: tau f                                            [5.5 msec]
;d26: 1/(4J(NH)) - tau g                               [2.3 msec]
;d27: tau e                                            [12.4 msec]
;d29: incremented delay (F2 in 3D) = d21/2-p14/2-p26-d25-4u
;d30: decremented delay (F2 in 3D) = d21/2-p14/2
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o2p: Caliphatic chemical shift (cnst23)
;inf1: 1/SW(Cali) = 2 * DW(Cali)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Cali)) =  DW(Cali)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in20: = in0
;in29: = in10
;in30: = in10
;ns: 4 * n
;ds: >= 16
;td1: number of experiments in F1       td1 max = 2 * d20 / in20
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;cpd4: decoupling according to sequence defined by cpdprg4
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence
;pcpd4: f4 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:          gp 1 : gp 2 : gp 3
;                               30 :   80 :  8.1

;for z-only gradients:
;gpz1: 30%
;gpz2: 80%
;gpz3: 8.1%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;$Id: $
