;cdcancocahagp3d
;avance-version (21/09/15)
;CDCA(NCO)CAHA
;3D sequence with
;   inverse correlation for triple resonance using inept
;   transfer steps
;
;      F1(H) -> F2(Cad,t1) -> F3(N) > F2(CO)
;            -> F2(Cad,t2) -> F1(H,t3)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho gradient selection (t2)
;using constant time in t1
;using constant time in t2
;(use parameterset )
;
;M.J. Bottomley, M.J. Macias, Z. Liu & M. Sattler,
;   J. Biomol. NMR 13, 381-385 (1999)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"

"d3=2.0m"
"d4=1.8m"
"d21=5.4m"
"d22=4.5m"
"d23=14m"
"d27=8m"


"d0=3u"
"d10=d22-d4*2"
"d20=d27-p14-p24/2-4u"
"d30=d22"

"in0=inf1/2"
"in10=inf2/2"

"in20=in0"
"in30=in10"

"td1=tdmax(td1,d20*2,in20)"
"td2=tdmax(td2,d30*2,in30)"


"DELTA1=d27-d0-p14-p24/2"
"DELTA2=d27-d0-p21*2-3u"
"DELTA3=d23-d21"
"DELTA4=d23-d22+4u"
"DELTA5=d4*2-p16-d16-8u"
"DELTA6=p16+d16+8u"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst22)/1000000)"
"spoffs7=bf2*((cnst22-cnst21)/1000000)"
"spoffs8=0"
"spoffs9=0"
"spoffs13=bf2*((cnst26-cnst21)/1000000)"


"o1_F1=bf2*cnst22/1000000"
"o1_F2=bf2*cnst22/1000000"


aqseq 312


1 d11 ze
  d11 pl12:f2 
2 d11 do:f2 do:f3
3 d1 pl1:f1 pl3:f3 fq=cnst22(bf ppm):f2
  50u UNBLKGRAD

  (p1 ph1):f1
  d4
  (center (p2 ph1):f1 (p14:sp3 ph9):f2 )
  d4
  (p1 ph2):f1

  4u
  p16:gp3*EA
  d16 pl19:f1

  (p13:sp2 ph3):f2
  (
  refalign (d0 p14:sp5 ph1 DELTA1 p24:sp9 ph7 d20 p14:sp5 ph1 4u):f2 
  lalign (d3 4u cpds1):f1 
  lalign (d0 DELTA2 p21 ph2 3u p22 ph1 3u p21 ph2):f3
  )
  (p13:sp8 ph1):f2      

  4u do:f1

  (p21 ph4):f3
  d21
  DELTA3 cpds1:f1
  (center (p8:sp13 ph1):f2 (p22 ph1):f3 )
  d23
  (p21 ph1):f3

  4u do:f1
  p16:gp4
  d16 fq=cnst21(bf ppm):f2

  (p13:sp2 ph5):f2
  d22
  (p14:sp7 ph1):f2
  DELTA4
  (center (p14:sp3 ph1):f2 (p21 ph1 3u p22 ph2 3u p21 ph1):f3 )
  d23 pl16:f3
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph1):f2

  30u fq=cnst22(bf ppm):f2
  4u cpds1:f1
  4u cpd3:f3

  (p13:sp2 ph6):f2
  4u
  (p14:sp5 ph1):f2
  d30
  (p24:sp9 ph8):f2
  4u
  (p14:sp5 ph1):f2
  d10
  4u do:f1
  p16:gp1*EA
  d16
  DELTA5 pl1:f1
  4u do:f3
  (center (p1 ph1) (p13:sp8 ph11):f2 )
  d4
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  d4
  (center (p1 ph2) (p13:sp2 ph10):f2 )
  d4
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  d4
  (p1 ph1)
  DELTA6
  (p2 ph1)
  4u
  p16:gp2
  d16 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2
     F1PH(calph(ph3, +90) & calph(ph9, +90), caldel(d0, +in0) & caldel(d20, -in20))
     F2EA(calgrad(EA) & calph(ph10, +180), caldel(d10, +in10) & caldel(d30, -in30) & calph(ph10, +180) & calph(ph11, +180) & calph(ph31, +180))

exit


ph1=0
ph2=1
ph3=0 
ph4=0 2
ph5=0 0 2 2
ph6=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph7=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph8=0 0 0 0 2 2 2 2 1 1 1 1 3 3 3 3
ph9=0
ph10=3
ph11=0
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp9: f2 channel - shaped pulse 180 degree  (Cad on resonance)
;     sp9 requires higher selectivity - refocussing Cad only
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse for refocussing
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J'(CH))                                      [2.0 msec]
;d4 : 1/(4J)CH                                         [1.8 msec]
;d10: incremented delay (F2 in 3D) = d22-d4*2 
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d27-p14-p24/2-4u
;d21: 1/(2J(NH)                                        [5.4 msec]
;d22: 1/(4J(COCa)                                      [4.5 msec]
;d23: 1/(4J(NCO)                                       [14 msec]
;d27: 1/(4J(NCad)                                      [8 msec]
;d30: decremented delay (F2 in 3D) = d22
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst26: Call chemical shift (offset, in ppm)          [101 ppm]
;o2p: Calpha chemical shift (cnst22)
;inf1: 1/SW(Cad) = 2 * DW(Cad)
;inf2: 1/SW(Cad) = 2 * DW(Cad)
;in0: 1/(2 * SW(Cad)) =  DW(Cad)
;nd0: 2
;in10: 1/(2 * SW(Cad)) = DW(Cad)
;nd10: 2
;in30: = in10
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1 80%
;gpz2 20.1%
;gpz3 -70%
;gpz4 70%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100



;$Id: $
