;clhmbcetgpl3nd
;avance-version (12/01/11)
;clean HMBC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;phase sensitive using Echo/Antiecho gradient selection
;with three-fold low-pass J-filter to suppress one-bond correlations
;no decoupling during acquisition
;
;P. Wuertz, P. Permi, N.C. Nielsen & O.W. Soerensen, 
;   J. Magn. Reson 194, 89-98 (2008)
;(D.O. Cicero, G. Barbato & R. Bazzo, J. Magn. Reson. 148, 
;   209-213 (2001))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"cnst30=(1-sfo2/sfo1)/(1+sfo2/sfo1)"

define list<gradient> EA1 = { 1.000 -cnst30}
define list<gradient> EA2 = { -cnst30 1.000}


"TAU1=4u"
"TAU2=1s/(2 * (cnst6 + 0.07 * (cnst7-cnst6) ) ) - p14/2"
"TAU3=1s/(2 * (cnst7 - 0.07 * (cnst7-cnst6) ) ) - p14/2"
"TAU4=TAU2 + TAU3 + p14/2"


"p2=p1*2"
"d6=1s/(cnst13*2)"


"d0=3u"

"in0=inf1/2"


"DELTA1=1s/(cnst7 + cnst6) -p16-d16"
"DELTA2=d6-p16-d16-4u"
"DELTA3=p2+d0*2"

"TAU5=TAU4+p14+4u"


"l0=0"


1 ze 
2 d1

  if "l0 %4 == 0"
     {
     20u
     "d21=TAU1"
     }
  if "l0 %4 == 1"
     {
     20u
     "d21=TAU2"
     }
  if "l0 %4 == 2"
     {
     20u
     "d21=TAU3"
     }
  if "l0 %4 == 3"
     {
     20u
     "d21=TAU4"
     }

3 p1 ph1
  DELTA1 UNBLKGRAD
  p16:gp3
  d16 pl2:f2
  (p3 ph1):f2
  4u
  p16:gp3*-1
  d16
  DELTA2
  (p3 ph2):f2
  d0
  p2 ph1
  d0
  p16:gp1*EA1
  d16
  (p24:sp7 ph3):f2
  DELTA3
  p16:gp1*EA2
  d16 pl2:f2
  (p3 ph4):f2

  (TAU5) (d21 p14:sp3 ph1):f2
   
  4u BLKGRAD
  4u iu0
  go=2 ph31
  d1 mc #0 to 2 
     F1EA(calgrad(EA1) & calgrad(EA2), caldel(d0, +in0) & calph(ph2, +180) & calph(ph31, +180))
exit 
  

ph1=0
ph2=0 2
ph3=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph4=0 0 2 2
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;sp3: f2 channel - shaped pulse (180degree inversion)
;spnam3: Crp60,0.5,20.1 (Crp80,0.5,20.1)
;sp7: f2 channel - shaped pulse (180degree refocussing)
;spnam7: Crp60comp.4 (Crp80comp.4)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500us for Crp60,0.5,20.1 (Crp80,0.5,20.1)
;p16: homospoil/gradient pulse                         [1 msec]
;p24: f2 channel - 180 degree shaped pulse for refocussing
;     = 2msec for Crp60comp.4 (Crp80comp.4)
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d6 : delay for evolution of long range couplings (1/2Jlr)
;d16: delay for homospoil/gradient recovery
;d21: delay for low-pass J-filter
;cnst6: = 1J(XH)min
;cnst7: = 1J(XH)max
;cnst13: = J(XH) long range
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: echo-antiecho


;for z-only gradients:
;gpz1: 80%
;gpz3: 14%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam3: SMSQ10.100



;Processing

;PH_mod(F1): pk (or no)

;use xfb and xf2m



;$Id:$
