;clipcosy
;avance-version (19/02/11)
;Clean In-phase COSY
;2D H-1/H-1 correlation using in-phase transfer
;phase sensitive
;with zero quantum suppression
;
;M.R.M. Koos, G. Kummerloewe, L. Kaltschnee, C.M. Thiele & B. Luy, 
;   Angew. Chem. Int. Ed. 55, 7655-7659 (2016)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d4=1s/(cnst1*4)"
"d11=30m"


"in0=inf1"

"d0=in0/2-p1*4/PI"


"l0=l8+1"


"acqt0=-p1*2/PI"


1 ze 
2 d11 pl1:f1 
  d1 
  50u UNBLKGRAD

  p1 ph1
  d0
  p1 ph2

  10u gron0
  (p32:sp29 ph3):f1
  20u groff
  d16 pl1:f1

  p1 ph4
4 d4
  p2 ph5
  d4
  p1 ph5
  d4
  p2 ph6
  d4
  lo to 4 times l0
  p1 ph7

  10u gron0*1.333
  (p32*0.75:sp29 ph3):f1
  20u groff
  d16
  p16:gp3
  d16 pl1:f1
  4u BLKGRAD
  p1 ph8 

  go=2 ph31 
  d11 mc #0 to 2 
     F1PH(calph(ph1, +90), caldel(d0, +in0))
exit 

ph1=0 2
ph2=0
ph3=0
ph4=0
ph5=1
ph6=3
ph7=0 0 0 0 2 2 2 2
ph8=0 0 2 2
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;sp29: f1 channel - shaped pulse (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse                        [1 msec]
;p32: f1 channel - 180 degree shaped pulse (adiabatic)      [20 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;d0 : incremented delay (2D) = in0/2-p1*4/PI
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(HH))
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;cnst1: > J(HH)                                        [30 Hz]
;l8: number of relay steps
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(1 * SW(H)) = 2 * DW(H)
;nd0: 1
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ


;for z-only gradients:
;gpz0: ca. 11% 
;gpz3: 31%

;use gradient files:
;gpnam3: SMSQ10.100


;for sweepwidth of adiabatic shape and adjusting gpz0
;   see supplementary material of M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)



;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
