;colocqf
;avance-version (12/01/11)
;2D H-1/X correlation via long-range couplings
;   with H-H decoupling in F1
;
;H. Kessler et al., J. Magn. Reson. 57, 331 (1984)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"p4=p3*2"
"d11=30m"
"d12=20u"


"in0=inf1/2"

"d0=3u"


1 ze
2 d11
3 d1 do:f2 
  d12 pl2:f2
  (p3 ph1):f2
  (d6) (d0 p4 ph2):f2 (d0 p2 ph4):f1
  (p3 ph3):f2 (p1 ph5):f1
  d18 pl12:f2
  go=2 ph31 cpd2:f2
  d11 mc #0 to 2 F1QF(caldel(d0, +in0))
  d11 do:f2
exit


ph1=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
    3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3
ph2=0
ph3=0 1 0 1 0 1 0 1 2 3 2 3 2 3 2 3
ph4=0
ph5=0 1 2 3 1 2 3 0 2 3 0 1 3 0 1 2
    1 2 3 0 2 3 0 1 3 0 1 2 0 1 2 3
    2 3 0 1 3 0 1 2 0 1 2 3 1 2 3 0
    3 0 1 2 0 1 2 3 1 2 3 0 2 3 0 1
 ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d6 : delay for evolution of long range couplings
;     d6 => d0 + (p2 or p4) + (td1 * in0)
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d18: delay for evolution of long range couplings
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;ns: 16 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
