;cosydcphwt
;avance-version (12/01/11)
;2D homonuclear shift correlation
;phase sensitive
;WET solvent suppression with shape pulse
;with C-13 decoupling on f2 during WET and AQ
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<lcnmr>


#include <Avance.incl>
#include <Grad.incl>


"d11=30m"
"d12=20u"
"d13=4u"


"in0=inf1"

"d0=in0/2-p1*2/3.1416-p0*2/3.1416"


1 ze
  d12 pl14:f2
2 d11 do:f2
3 d1 BLKGRAD
  50u UNBLKGRAD
  d12 pl0:f1
  d13 cpd2:f2
  (p11:sp7 ph5):f1
  4u
  p16:gp21
  d16 pl0:f1
  (p11:sp8 ph6):f1
  4u
  p16:gp22
  d16 pl0:f1
  (p11:sp9 ph6):f1
  4u
  p16:gp23
  d16 pl0:f1
  (p11:sp10 ph6):f1
  4u
  p16:gp24
  d16 pl1:f1
  p1 ph1
  d0
  p0 ph2
  go=2 ph31
  d11 do:f2 mc #0 to 2 F1PH(calph(ph1, +90) & calph(ph29, +90), caldel(d0, +in0))
  d11 BLKGRAD
exit


ph1=0 2 2 0 1 3 3 1
ph2=0 2 0 2 1 3 1 3
ph5=0
ph6=1
ph31=0 2 2 0 1 3 3 1


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl14: f2 channel - power level for decoupling
;sp1: f1 channel - shaped pulse
;        powerlevel for 90 degree pulse
;sp7: f1 channel - shaped pulse
;sp8: f1 channel - shaped pulse
;sp9: f1 channel - shaped pulse
;sp10: f1 channel - shaped pulse
;p0 : f1 channel -  20 to 90 degree high power pulse
;p1 : f1 channel -  90 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse                       [2msec]
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2 : garp.p31
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp21 : gp22 : gp23 : gp24
;                         80 :   40 :   20 :   10

;for z-only gradients:
;gpz21: 80%
;gpz22: 40%
;gpz23: 20%
;gpz24: 10%

;use gradient files:   
;gpnam21: SMSQ10.100
;gpnam22: SMSQ10.100
;gpnam23: SMSQ10.100
;gpnam24: SMSQ10.100


;use power levels               sp7        sp8        sp9        sp10
;                       sp1     +0.87      -1.04      +2.27      -5.05


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
