;cosydfqf
;avance-version (12/01/11)
;2D homonuclear shift correlation
;with double quantum filter
;
;A. Wokaun & R.R. Ernst, Chem. Phys. Lett. 52, 407 (1977)
;U. Piantini et al., J. Am. Chem. Soc. 104, 6800 (1982)
;A.J. Shaka & R. Freeman, J. Magn. Reson. 51, 169 (1983)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"d13=4u"


"in0=inf1"

"d0=3u"


1 ze
2 d1
3 p1 ph1
  d0
  d20
  p1 ph2
  d13
  p1 ph3
  d20
  go=2 ph31
  d1 mc #0 to 2 F1QF(caldel(d0, +in0))
exit

ph1=0 2 1 3 1 3 0 2 1 3 2 0 2 0 1 3
ph2=0 2 1 3 2 0 1 3 1 3 2 0 3 1 2 0
ph3=0 0 0 0 1 1 1 1 1 1 1 1 2 2 2 2
ph31=0 0 2 2 0 0 2 2 1 1 3 3 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d13: short delay                                    [4 usec]
;d20: to enhance intensity of DQC
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF



;$Id:$
