;cosygphfqf
;avance-version (16/08/17)
;1H-19F COSY (H observe, F decouple)
;2D homonuclear shift correlation
;using gradient pulses for selection
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=
;
;J-P. Macheteau et al.
;   J. of Fluorine Chemistry 149-154,104 (2000)


#include <Avance.incl>
#include <Grad.incl>


"in0=inf1"

"d0=3u"


1 ze
2 d1
3 (p3 ph1):f2
  d0
  50u UNBLKGRAD
  p16:gp1
  d16
  (p3 ph3):f2 
  (p1 ph2)
  4u
  p16:gp2
  d16
  4u BLKGRAD
  go=2 ph31
  d1 mc #0 to 2 F1QF(caldel(d0, +in0))
exit


ph1=0 2
ph2=0 0 2 2
ph3=0 
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 1 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF


;for z-only gradients:
;gpz1: 20%
;gpz2: 18.8%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
