;cosygpmfph
;avance-version (12/01/11)
;2D homonuclear shift correlation
;phase sensitive
;using gradient pulses for selection
;with multiple quantum filter according to gradient ratio
;use pulseprogram 'mqsgp1d' for setup
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"
"d13=4u"


"in0=inf1"

"d0=in0/2-p1*4/3.1416"


"DELTA=p16+d16+d13"


1 ze
2 d1
3 p1 ph1
  d0
  p1 ph2
  DELTA UNBLKGRAD
  p2 ph4
  d13
  p16:gp1
  d16
  p1 ph3
  DELTA
  p2 ph4
  d13
  p16:gp2
  d16
  4u BLKGRAD
  go=2 ph31
  d1 mc #0 to 2 F1PH(calph(ph1, +90), caldel(d0, +in0))
exit


ph1=1 3
ph2=0 
ph3=1 
ph4=0
ph31=0 2


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 1 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ

;use gradient ratio:	gp 1 : gp 2
;			  10 :   20   for double quantum filter
;			  10 :   30   for triple quantum filter

;for z-only gradients:
;gpz1: 10%
;gpz2: 20% for DQF, 30% for TQF

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
