;cosygpphppw5
;avance-version (14/03/06)
;2D homonuclear shift correlation
;phase sensitive
;water suppression using watergate W5 pulse sequence with gradients
;using double echo
;
;(M. Liu, X. Mao, C. He, H. Huang, J.K. Nicholson & J.C. Lindon,
;   J. Magn. Reson. 132, 125 - 129 (1998))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>


"d11=30m"


"in0=inf1"

"d0=in0/2-p1*2/PI-p0*2/PI"


1 ze
2 d11

  20u pl10:f1
  p17 ph5
  p17*2 ph7

  20u pl32:f1
  d1 cw:f1 ph29
  4u do:f1
  20u pl1:f1
  50u UNBLKGRAD

  p1 ph1
  d0
  p0 ph2

  4u
  p16:gp1
  d16 pl18:f1
  p27*0.087 ph3
  d19*2
  p27*0.206 ph3
  d19*2
  p27*0.413 ph3
  d19*2
  p27*0.778 ph3
  d19*2
  p27*1.491 ph3
  d19*2
  p27*1.491 ph4
  d19*2
  p27*0.778 ph4
  d19*2
  p27*0.413 ph4
  d19*2
  p27*0.206 ph4
  d19*2
  p27*0.087 ph4
  p16:gp1
  d16

  8u

  p16:gp2
  d16
  p27*0.087 ph5
  d19*2
  p27*0.206 ph5
  d19*2
  p27*0.413 ph5
  d19*2
  p27*0.778 ph5
  d19*2
  p27*1.491 ph5
  d19*2
  p27*1.491 ph6
  d19*2
  p27*0.778 ph6
  d19*2
  p27*0.413 ph6
  d19*2
  p27*0.206 ph6
  d19*2
  p27*0.087 ph6
  p16:gp2
  d16

  4u BLKGRAD

  go=2 ph31
  d11 mc #0 to 2 
     F1PH(calph(ph1, +90) & calph(ph29, +90), caldel(d0, +in0))
exit


ph1=0 2
ph2=0 0 0 0 2 2 2 2
ph3=0 0 1 1
ph4=2 2 3 3
ph5=0
ph6=2
ph7=1
ph29=0
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl18: f1 channel - power level for W5-pulse (watergate)
;pl32: f1 channel - power level for low power presaturation
;p0 : f1 channel -  20 to 90 degree high power pulse
;p1 : f1 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;p17: f1 channel - trim pulse                             [2.5 msec]
;p27: f1 channel -  90 degree pulse at pl18
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                                  [30 msec]
;d16: delay for homospoil/gradient recovery
;d19: delay for binomial water suppression
;     d19 = (1/(2*d)), d = distance of next null (in Hz)
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n, total number of scans: NS * TD0
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ


;for z-only gradients:
;gpz1: 34%
;gpz2: 22%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;set pl32 to 0W when presaturation is not required
;   use pl1 + 75 to 80dB to reduce radiation damping



;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
