;cosyjdqf
;avance-version (12/01/11)
;2D homonuclear shift correlation
;with H-H decoupling in F1
;using constant time
;
;A. Bax & R. Freeman, J. Magn. Reson. 44, 542 (1981)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"


"in0=inf1/2"

"d0=3u"


1 ze
2 d1
3 p1 ph1
  (d6) (d0 p2 ph2)
  p1*0.5 ph3
  d18
  go=2 ph31
  d1 mc #0 to 2 F1QF(caldel(d0, +in0))
exit


ph1=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
ph2=1 1 1 1 3 3 3 3 2 2 2 2 0 0 0 0
ph3=0 2 1 3 0 2 1 3 1 3 2 0 1 3 2 0
ph31=0 0 2 2 0 0 2 2 1 1 3 3 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d6 : delay for evolution of long range couplings
;     d6 => d0 + p2 + ((td1 - 1) * in0)
;d18: delay for evolution of long range couplings
;     may be used to optimize for long-range couplings
;inf1: 1/SW = 2 * DW
;in0: 1/(2 * SW) = DW
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF



;$Id:$
