;cosyqfrl
;avance-version (12/01/11)
;2D homonuclear shift correlation
;   with relay transfer 
;
;G. Wagner, J. Magn. Reson. 55, 151 (1983)
;A. Bax & G. Drobny, J. Magn. Reson. 61, 306 (1985)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d2=1s/(cnst1*3.2)"


"in0=inf1"

"d0=3u"


1 ze
2 d1
3 p1 ph1
  d0
  p1 ph2
  d2
  p2 ph3
  d2
  p1 ph4
  go=2 ph31
  d1 mc #0 to 2 F1QF(caldel(d0, +in0))
exit


ph1=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
    2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph2=0 0 1 1 2 2 3 3 1 1 2 2 3 3 0 0
    2 2 3 3 0 0 1 1 3 3 0 0 1 1 2 2
ph3=0 0 1 1 2 2 3 3 1 1 2 2 3 3 0 0
    2 2 3 3 0 0 1 1 3 3 0 0 1 1 2 2
ph4=0 2 1 3 0 2 1 3 1 3 2 0 1 3 2 0
    2 0 3 1 2 0 3 1 3 1 0 2 3 1 0 2
ph31=0 0 2 2 0 0 2 2 1 1 3 3 1 1 3 3
     2 2 0 0 2 2 0 0 3 3 1 1 3 3 1 1


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : ca. 1 / (3.2 * J)
;cnst1: = J(HH)
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF



;$Id:$
