; cpCNCCXsel3D 
;avance-version (20/12/01)
;
;
; Version 1.0 TS3.0  /8/8/2011
;
; 3D experiment 1H-->13(Ca or CO)(Sel dec (CO or Ca) )(t1)-->15N(t2)-->13(CO) or Ca or [CX](t3)
; JOS 10/2008 
; tested on 7/9/2011 on Avance III console,
; revised and checked for consistency JOS 8/1/2011
; 
; Reference:
; Lichi S, Peng X, Mumdooh AMA, Edwards D, Brown LS, Ladizhansky V, 
; Resolution enhancement by homonuclear J-decoupling: application to 
; three-dimensional solid-state magic angle spinning NMR spectroscopy; J. Biomol NMR (2008) 41:9-15
;
;
;Parameters:
;pl3 : f2 -  90 degree proton power level for p3 (default)
;p3 : f2  -  90 degree proton pulse length at pl3
;sp0 : f2 -  H1 ramp, 1H-13C CP 
;pl10 : f1-  C13, 1H-13C CP
;p15: f2,f1 - H1-C13 CP contact 
;pl11: f1 -  90 degree carbon power level for p1
;p1 : f1  - 90 degree carbon pulse length at pl11
;sp8 : f1 - R_SNOB on CO 
;p20: f1  - RSnob on CO
;pl20: f3 -  90 degree nitrogen power level for p5
;p5 :  f3 -  90 degree nitrogen pulse length at pl20
;sp1 : f3 -  13CA->15N CP
;pl5 :f1 -  C13, 13CA->15N CP
;p16: f1,f3 -  13CA->15N CP contact
;sp7 : f1 -  ramp 13CO, 15N->13CO CP
;pl7 :f3 -  N15, 15N->13CO CP
;p17: f3,f1 - N15->CO13 CP contact
;
;pl13: f2 -  cw proton decoupling power level
;pl14: f2 -  proton decoupling during evolution
;cpds1:f2 -  decoupling during evolution, using pl14
;pl12: f2 -  proton decoupling during acquisition
;cpds2:f2 -  decoupling during acquisition, using pl12
;zgoptns : -Dlacq, -Dlcp15, or blank
;d2 : constant mixing time
;d1 : relaxation delay: 1.25 * T1(H1), but > 50 * aq
;NS: 4 * n
;DS: dummy scan
;
;
;$CLASS=BioSolids
;$DIM=3D
;$TYPE=cross polarisation
;$SUBTYPE=simple 3D
;$COMMENT=CONCA 3D EXPERIMENT

prosol relations=<solids_cp>


#include <Avance.incl>

#include <trigg.incl>	/*10 usec trigger pulse at TCU connector I cable 6 */


#ifdef fslg
#include <lgcalc.incl>
;cnst20 : RF field achieved at pl13
;cnst21 : on resonance, usually = 0
;cnst22 : positive LG offset
;cnst23 : negative LG offset
;cnst24 : additional LG-offset
;cnst27 : C offset, CO offresonance (Hz)
;cnst28 : C offset, onresonance (usually = 0)

#endif /* fslg */
;cnst11 : to adjust t=0 for acquisition, if digmod = baseopt
"acqt0=1u*cnst11"

define pulse pic
"pic=p1*2"

define pulse mixing
"mixing=l1*1s/cnst31"
#ifdef seldec
"p20=(l20+0.5)*1s/cnst31"
#else
"p20=(l20)*1s/cnst31"
#endif
"d20=p20"
"d0=p20-1u"
"d10=0.5u"
"l0=0"
"l1=0"
"in0=inf1"
"in10=inf2"


"cnst21=0"

aqseq 312

1 ze

2 d1 do:f2
#ifndef lcp15
#include <p15_prot.incl>
			;make sure p15 does not exceed 10 msec 
			;let supervisor change this pulseprogram if 
			;more is needed
#endif

#ifndef lacq		
			;disable protection file for long acquisition change decoupling power !!! or you risk probe damage
			;if you set the label lacq (ZGOPTNS -Dlacq), the protection is disabled

#include <aq_prot.incl>	
			;allows max. 50 msec acquisition time, supervisor
			;may change  to max. 1s at less than 5 % duty cycle
			;and reduced decoupling field
#endif
  1u reset:f1 reset:f2 reset:f3 
  trigg
 1u fq=cnst21:f2
 1u 			; rf on 13C on 70ppm
  (ralign  (p1 pl25 fq=cnst10(bf ppm) ph12):f1 (p3 pl12 ph1):f2)  ; 90 H1 pulse, 90 13C pulse for direct polarization
  (p15 pl1  ph3):f1 (p15:sp0 ph2):f2           ; H->C CP

d20 cpds2:f2
(pic pl11 ph7):f1                   ;C hard pi pulse
1u fq=cnst10(bf ppm):f1
(center (d0) (p20:sp8 ph8):f4 (p21*2 pl21 ph6):f3) ;off resonance CO/CA 180, N pi to refocus CO-CA, C-N J coupling
                                     ;t1 Ca evolution
                             ;stop the low power decoupling during t1 evolution
 0.5u do:f2
 (p16:sp1 ph4):f1 (p16 pl5 ph5):f3 (p16 pl15 ph0):f2; CO->N CP
if "l0==1"
   {
   "d10=in10-2u"
   }
if "l0>0"
   {
1u fq=cnst8(bf ppm):f1 cpds2:f2                                      ;start the low power decoupling during t2 evolution
                                  		; t2/2 N evolution
(center (d10) (pic pl11 ph11):f1)			; C hard pi pulse to refocus N-C J coupling
                                 			; t2/2 N evolution

     ;fq=cnst28:f1			; jump to CO evolution on resonance ( 120 ppm)  set spoffs2 to 175 ppm
0.5u do:f2
   }
1u  fq=cnst8(bf ppm):f1 do:f2
(p17:sp2 ph9):f1 (p17 pl6 ph10):f3  (p17 pl16 ph0):f2 ; N->Ca CP
1u fq=cnst9(bf ppm):f1
#ifdef spindiff
(p1 pl11 ph12):f1
(mixing pl14 ph0):f2
(p1 pl11 ph13):f1
#endif
1u cpds2:f2                        ; start decoupling in t3 (direct) dimension
go=2 ph31

1m do:f2
 

30m do:f2 mc #0 to 2	  		  ; 
 
  F1PH(ip3, id0)     			  ; reset d10, ph4 incremented for TPPI in t1, d0 incremented
  F2PH(rd0 & ip10, id10 & iu0) 		  ;inner loop, ph10 incremented for TPPI in t2, d10 incremented

HaltAcqu, 1m		;jump address for protection files 
exit


ph0=0
ph1=1   
ph2=0 2
ph3=0 
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2  
ph6=0
ph7=0
ph8=0 2 2 0
ph9=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1 			 
ph10=0
ph11=0  
ph12=1 3 3 1 3 1 1 3 2 0 0 2 0 2 2 0    	
ph13=3 1 1 3 1 3 3 1 0 2 2 0 2 0 0 2    	
ph31=0 2 2 0 2 0 0 2 1 3 3 1 3 1 1 3	 	



;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2



;$Id:$
