;cpINADEQUATE
;
;version: 1.0/TS3  8/1/2011
;
;basic J-based SQDQ correlation experiment with optional refocussing
;written by HF Dec 2010
;updated and checked by JOS 7/29/2011
;may require long experimental times for natural abundance samples
;
;Reference:
;A. Lesage, M. Bardet, and L. Emsley JACS 121, 10987 (1999)
;
;Avance III version
;parameters:
;d0 : incremented delay (2D) [0 usec]
;d1 : recycle delay
;p1 : X 90 degree pulse
;p2 : X 180 degree decoupling pulse during t1 CS evolution of Y nucleus
;p3 : H 90 degree pulse
;p31 : decoupling pulse for spinal64.13
;p15 : contact time; plw3 (rf-channel f3) and spw0 (rf-channel f2)
;pl1 : rf-power contact pulse on X
;pl11 : rf-power on X for 90 and 180 degree pulses
;pl12 : rf-power for 1H pi/2 pulse p3 and standard proton decoupling during J-evolution
;pl13 : rf=power for cw decoupling on 1H during acquisition
;sp0 : rf-power for proton contact pulse, 50 -20% ramped amplitude modulation
;spnam0 : file name for variable amplitude CP
;cpdprg1 : sequence used for decoupling (spinal64.13)
;cpdprg2 : sequence used for decoupling (spinal64, tppm15, cw, etc.)
;pcpd2 : pulse length in decoupling sequence
;cnst31 : MAS spinning speed 
;NS : 32 * n                     
;l5 : rp's for J refocusing dtau1= 3.5 - 5.5 ms for 45 -70 Hz coupling
;l7 : rp's for J refocusing dtau3= 3.5 - 5.5 ms for 45 -70 Hz coupling
;l8 : rp's for z-filter short for natural abundance 2 - 5 ms for labeled systems
;in0 : = inf1 -> SWH in F1 = n*rotation rate
;FnMODE: States-TPPI, STATES, TPPI
;ZGOPTNS : -Drefoc for refocussed INADEQUATE
;
;
;$CLASS=Solids
;$DIM=2D
;$TYPE=cross polarisation
;$SUBTYPE=homonuclear correlation
;$COMMENT=INADEQUATE, CP excitation

prosol relations=<solids_cp>


define delay dtau1
"dtau1=((1s/cnst31)*l5-2*p1)"
define delay dtau3
"dtau3=((1s/cnst31)*l7-2*p1)"
"p2=2*p1"
"acqt0=-p1/2"
"in0=inf1"
"d0=0"

1 ze
2 10m do:f2
  d1
#include <p15_prot.incl>	
			;make sure p15 does not exceed 10 msec	
			;let supervisor change this pulseprogram if 
			;more is needed
#include <aq_prot.incl>	
			;allows max. 50 msec acquisition time, supervisor
			;may change  to max. 1s at less than 5 % duty cycle
			;and reduced decoupling field

  1u fq=cnst21:f2
  (p3 pl12 ph1):f2
  (p15 pl1 ph2):f1 (p15:sp0 ph10):f2
  dtau1 cpds2:f2
  (p2 pl11 ph4):f1
  dtau1
  (p1 ph5):f1
  d0  cpds1:f2
  (p1 ph6):f1
#ifdef refoc
  dtau3 cpds2:f2
  (p2 ph7):f1
  dtau3
#endif
  go=2 ph31 cpds1:f2
  1m do:f2
  10m mc #0 to 2 F1PH(ip2 & ip4 & ip5, id0)
HaltAcqu, 1m
exit

ph0= 0
ph1= 1 3
ph2= (8) 2 2 4 4 6 6 0 0
ph4= (8) 0 0 2 2 4 4 6 6 2 2 4 4 6 6 0 0
         4 4 6 6 0 0 2 2 6 6 0 0 2 2 4 4
ph5=(8) 0 0 2 2 4 4 6 6
ph6= 0
ph7= 1
ph10= 0
ph31= 0 2 2 0 0 2 2 0 2 0 0 2 2 0 0 2



;$Id:$
