;cpRFDR 
;
;version: 4.0/ TS3.0 / 8/05/2011
;
;
;written by HF, 16.9.98 modified by HF 21.5.07
;updated by JOS 5/4/20008
;updated and tested JOS 6/24/2011
;
;
;2D exchange NMR in rotating solids  
;rotor synchronized, set cnst31=spin rate, spin rate regulation
;recommended
;see Bennet, Ok, Griffin, Vega J. Chem. Phys. 98, 8624 (1992)
;for fpRFDR see  Ishii, Y, JCP114_19 (2001) p 8473 ff.
;
;Avance III version
;parameters:
;d1 : recycle delay
;d0 : =1u, t1 evolution period
;in0 : = 1/swh{F1}
;pl1 : X power level
;pl11 : power level for X pulses
;sp0 : proton power level during contact
;pl2 : =0W, not used
;pl12 : power level for H 90 and standard proton decoupling 
;pl13 : power level of LG decoupling, 120 dB at high rotation rates >15 kHz
;pl21 : power level for pi pulse during rfdr
;pcpd2 : pulse length in decoupling sequence
;p15 : contact time at pl1 (f1) and pl2 (f2)
;p10 : pulse length for FSLG shape
;p3 : H 90 degree pulse
;p1 : X 90 degree pulse
;p2 : X 180 degree pulse
;cpdprg2 : sequence used for decoupling (tppm15, cw, etc.)
;cpdprg1 : cwlg, using pl13
;spnam0 : file name for variable amplitude CP
;cnst20 : proton RF field to calculate LG parameters
;cnst21 : =0, proton offset
;cnst22 : +ve Lee-Goldburg offset
;cnst23 : -ve Lee-Goldburg offset
;cnst24 : additional Lee-Goldburg offset
;cnst31 : spinning frequency
;l1 : number of rotor cycles for mixing time
;ZGOPTNS : -Dfprfdr for rotation rates above 18 kHz
;
;
;$CLASS=Solids
;$DIM=2D
;$TYPE=cross polarisation
;$SUBTYPE=homonuclear correlation
;$COMMENT=exchange NMR (RFDR) in rotating solids, rotor synchronized

prosol relations=<solids_cp>


#include<trigg.incl>
#ifdef fprfdr
"p2=1s/(3*cnst31)"
#endif
define delay tau
"tau=0.5s/cnst31-p2/2"
"d31=1s/cnst31"
;"d0=1s/cnst31"

define delay mix
"mix=l1*d31"
;cnst11 : to adjust t=0 for acquisition, if digmod = baseopt
"acqt0=1u*cnst11"
"in0=inf1"
"d0=in0"


#include <lgcalc.incl>
	;calculates the lg offset cnst22 from cnst20=RF field

1 ze
#include <rot_prot.incl>		
				;protect for too slow rotation
#ifndef lcp15
#include <p15_prot.incl>
			;make sure p15 does not exceed 10 msec 
			;let supervisor change this pulseprogram if 
			;more is needed
#endif
#ifndef lacq		
			;disable protection file for long acquisition change decoupling power !!! or you risk probe damage
			;if you set the label lacq (ZGOPTNS -Dlacq), the protection is disabled

#include <aq_prot.incl>	
			;allows max. 50 msec acquisition time, supervisor
			;may change  to max. 1s at less than 5 % duty cycle
			;and reduced decoupling field
#endif
  mix
  d31
2 10m do:f2
  d1 rpp4
  2u fq=cnst21:f2
 trigg
  (p3 pl12 ph1):f2
  (p15 pl1 ph2):f1 (p15:sp0 ph10):f2
  d0 cpds2:f2
  (p1 pl11 ph3):f1 (1u cpds3):f2		;use cwlg to avoid HH match during mix
5 tau 			;mixing time with Gullion sequence
  (p2 pl21 ph4^):f1
  tau
  lo to 5 times l1
  (p1 pl11 ph5):f1 
  go=2 ph31 cpds2:f2
  1m do:f2
  10m mc #0 to 2 F1PH(ip2,id0)
HaltAcqu, 1m
6 exit
ph1=1 3
ph2=0
ph3= 0 0 0 0 2 2 2 2
ph4=0 1 0 1 1 0 1 0	2 3 2 3 3 2 3 2 ;xy16		
ph5=0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2
ph10=0 0 2 2
ph31=0 2 2 0 2 0 0 2 
     2 0 0 2 0 2 2 0



;$Id:$
