;cp_stab
;avance-version (20/11/23)
;pulse prgoram used to test probe stability, use d8 to define dutycycle
;FnMODE: is set to "undefined" since 2d container is only used for storage of 1d datasets
;
;TS3 / 03.06.2011
;
;checked by SEWE 02.08.2011
;
;basic cp experiment for probetesting
;
;Avance III version
;parameters: 
;pl1 : X power level during contact
;pl2 : =0W, not used
;pl12 : decoupling power level (if not plw13)
;pl13 : special decoupling power level (e.g. spinal64_13)
;sp0 : proton power level during contact
;p3 : proton 90deg at power level plw12
;p15 : contact time at plw1 (f1) and spw0 (f2)
;d1 : recycle delay
;d8 : repetition time
;cnst21 : on resonance, usually = 0
;pcpd2 : pulse length in decoupling sequence
;cpdprg2 : cw, tppm (at pl12), or lgs, cwlg. cwlgs (LG-decoupling 
;spnam0 : use e.g. ramp.100 for variable amplitude CP
;   here pl13 is used instead of pl12)
;zgoptns : -Dfslg, -Dlacq, -Dlcp15, or blank
;
;
;$CLASS=Solids
;$DIM=pseudo 2D
;$TYPE=cross polarisation
;$SUBTYPE=simple 1D
;$COMMENT=basic cp experiment, arbitrary contact and decoupling schemes

prosol relations=<solids_cp>


#include <Avance.incl>


#ifdef fslg
#include <lgcalc.incl>
;cnst20 : RF field achieved at pl13
;cnst21 : on resonance, usually = 0
;cnst22 : positive LG offset
;cnst23 : negative LG offset
;cnst24 : additional LG-offset
#endif /* fslg */

;cnst11 : to adjust t=0 for acquisition, if digmod = baseopt

"acqt0=1u*cnst11"

"d7=d8-d1-p3-p15-1u-aq"


1 ze

2 d1 do:f2
#ifndef lcp15
#include <p15_prot.incl>
			;make sure p15 does not exceed 10 msec 
			;let supervisor change this pulseprogram if 
			;more is needed
#endif
#ifndef lacq		
			;disable protection file for long acquisition change decoupling power !!! or you risk probe damage
			;if you set the label lacq (ZGOPTNS -Dlacq), the protection is disabled

#include <aq_prot.incl>	
			;allows max. 50 msec acquisition time, supervisor
			;may change  to max. 1s at less than 5 % duty cycle
			;and reduced decoupling field
#endif

  1u fq=cnst21:f2
  (p3 pl12 ph1):f2
  (p15 pl1 ph2):f1 (p15:sp0 ph10):f2
  1u cpds2:f2 		;pl12 is used here with tppm, pl13 with cwlg, cwlgs
  go=2 ph31 finally do:f2
  1m do:f2 
  d7 wr #0 if #0 zd
  lo to 2 times td1
HaltAcqu, 1m
exit

ph0= 0
ph1= 1 3
ph2= 0 0 2 2 1 1 3 3
ph10= 0
ph31= 0 2 2 0 1 3 3 1



;$Id:$
