;cpmg1d
;avance-version (12/01/11)
;1D experiment with
;   T2 filter using Carr-Purcell-Meiboom-Gill sequence
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d11=30m"


1 ze
2 30m
  d1
  p1 ph1
3 d20
  p2 ph2
  d20
  lo to 3 times l4
  go=2 ph31
  30m mc #0 to 2 F0(zd)
exit


ph1=0 0 2 2 1 1 3 3 
ph2=1 3 1 3 0 2 0 2
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d20: fixed echo time to allow elimination of J-mod. effects 
;        d20 should be << 1/J ,but > (50 * P2)       [1-2 msec]
;l4: loop for T2 filter                              [4 - 20] 
;ns: 1 * n, total number of scans: NS * TD0
;ds: 16



;$Id:$
