;cpmgigsp
;avance-version (19/09/30)
;T2 measurement using Carr-Purcell-Meiboom-Gill sequence
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


define list<loopcounter> cpmglist=<$VCLIST>


"p2=p1*2"
"d11=30m"


"d20=d21/4-p26/2"


"acqt0=-p1*2/PI"


1 ze
2 d11 do:f2
  d1 pl1:f1 pl12:f2

  p1 ph1

3 d20
  (p26:sp8 ph2):f1
  d20
  d20
  (p26:sp8 ph2):f1
  d20
  lo to 3 times cpmglist

  go=2 ph31 cpd2:f2
  d11 do:f2 wr #0 if #0 cpmglist.inc 
  lo to 1 times td1
exit


ph1=0 0 2 2 1 1 3 3 
ph2=1 3 1 3 0 2 0 2
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp8: f1 channel - shaped pulse (180degree)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p26: f1 channel - 180 degree shaped pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d20: fixed echo time to allow elimination of diffusion
;     and J-mod. effects
;d21: length of double cpmg element ( length of single loop )
;ns: 8 * n
;ds: 16
;td1: number of experiments = number of values in vc-list
;FnMODE: undefined (or QF(no-frequency) ) 
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;define VCLIST

;this pulse program produces a ser-file (PARMOD = 2D)



;$Id:$
