;cpseltics
;
;TS 3 / 25.08.2011
;
;checked by sewe 26.08.2011
;
;basic cp experiment with SELTICS SSB-suppression at pl11
;
;
;Avance III version
;parameters:
;pl1 : X power level
;sp0 : proton power level during contact
;pl2 : =0W, not used
;pl11 : X power level for SELTICS spin lock (pul should correspond to 180deg)
;pl12 : power level for H 90 and standard proton decoupling 
;pl13 : special decoupling power e.g. spinal64_13
;p3 : H 90 degree pulse
;p15 : contact time at pl1 (f1) and pl2 (f2)
;d1 : recycle delay
;spnam0 : file name for variable amplitude CP
;cpdprg2 : sequence used for decoupling (e.g. spinal64)
;pcpd2 : pulse length in decoupling sequence
;cnst31 : spinning frequency
;zgoptns: -Dlacq, -Dlcp15 or blank to disable protection
;
;
;$CLASS=Solids
;$DIM=1D
;$TYPE=cross polarisation
;$SUBTYPE=side band suppression
;$COMMENT=basic cp experiment with SELTICS SSB-suppression

prosol relations=<solids_cp>


"d31=1s/cnst31"
 define delay del
 "del=(1s/cnst31)/24"
 define pulse pul
 "pul=(1s/cnst31)/24"
 "acqt0=0"		

1 ze			;accumulate into an empty memory
  d31
2 d1 do:f2		;recycle delay, decoupler off in go-loop
#ifndef lcp15
#include <p15_prot.incl>
			;make sure p15 does not exceed 10 msec 
			;let supervisor change this pulseprogram if 
			;more is needed
#endif
#ifndef lacq		
			;disable protection file for long acquisition change decoupling power !!! or you risk probe damage
			;if you set the label lacq (ZGOPTNS -Dlacq), the protection is disabled

#include <aq_prot.incl>	
			;allows max. 50 msec acquisition time, supervisor
			;may change  to max. 1s at less than 5 % duty cycle
			;and reduced decoupling field
#endif
#include <rot_prot.incl>	
			;protect against misset cnst31, must be more than 1000
  (p3 pl12 ph1):f2
  (p15 pl1 ph2):f1 (p15:sp0 ph10):f2
  del cpds2:f2
  del 
  (pul pl11 ph5):f1
  (pul ph5):f1
  (pul ph6):f1
  (pul ph6):f1
  del
  del
  del
  del
  (pul ph5):f1
  (pul ph6):f1
  go=2 ph31 finally do:f2
  1m 
  wr #0
HaltAcqu, 1m
exit

ph0= 0
ph1= 1 3
ph2= 0 0 2 2 1 1 3 3
ph5= 0 0 0 0 0 0 0 0
     2 2 2 2 2 2 2 2
     1 1 1 1 1 1 1 1
     3 3 3 3 3 3 3 3
ph6= 2 2 2 2 2 2 2 2
     0 0 0 0 0 0 0 0
     3 3 3 3 3 3 3 3
     1 1 1 1 1 1 1 1
ph10= 0
ph31= 0 2 2 0 1 3 3 1



;$Id:$
