;cpsuper
;avance-version (21/06/23)
;(TopSpin 4.1)

;pulse program derived from Prof. K.S.Rohr
;recoupling of CSA by 2*360deg pulses

; includes saturation recovery sequence (optional)
; choose correct d21 for calculation of 
; common solutions for pulse from 0.2464 to 0.4114 tR 
;(tR duration,e.g. 33us at 5 kHz, scalfac = 0.15
; 13C pulses: w1 = gamma B1 = 12.12 wR, p22 = (1/12.12 wR) / 2
; 1H decoupling: w1 = gamma B1 > 25 wR
; caveat: pulse from 0.197 to 0.447 tR 
; (tR/4 duration, scalfac = 0.19) does not work well
; gamma-integral before TOSS by l5-loop (set l5 = # of sidebands, 4 typically)

;Avance III / NEO version
;parameters:
;cnst31: =(w1/2pi)/12.12 (spinning frequency)
;pl1: X power for contact
;pl11: X power for w1 = 12.12 wR
;pl2: H power for contact
;spnam0 : file name for variable amplitude CP
;pl12: H power for TPPM decoupling during acq.
;pl13 : e.g. used in tppm13
;pl22: H power during delays
;pl23: H power during pulses (> 25 wR, or low)
;d4: z-filter delay (ca. 1 ms)
;in4: =(1s/cnst31)/l5
;in0: =(1s/cnst31)*0.155 
;d20 : pulse spacing in saturation comb (optional)
;d1 : recycle delay
;p1 : X 90 degree pulse at pl1
;p2 : X 180 degree pulse for TOSS at pl1
;p3 : H 90 degree pulse at pl12
;p15 : contact time
;pcpd2 : optional decoupling  pulse length
;l20 : # of pulses in saturation comb (0 if undesired)
;l5: counter for gamma-integral (e.g. 4)

; process with xfb, set paramter alpha to -1 in F1 and 
;use ptilt1 repeatedly until the spectrum / CSA in F1 displays properly in F1 without being folded


;$COMMENT=SUPER sequence by recoupling of CSA by 2*360deg pulses, optional saturation recovery
;$CLASS=Solids
;$DIM=2D
;$TYPE=cross polarisation
;$SUBTYPE=shift/CSA correlation

;$OWNER=Bruker
"acqt0=0"

define loopcounter td1half
"l4=0"				; initial t1
"p22=(1s/cnst31)*(1.0/24.24)"	; pulse for 180deg rotations
"td1half=td1/2"			; for STATES cosine/sine
"d21=(1s/cnst31)*0.2464-0.5u"	; start position of 4*180deg pulses
"d22=(0.5s/cnst31)-4*p22-d21-0.5u"
					; rest of tR/2 in CSA recoupling

"d25=(1s/cnst31)*0.1226-p1/2"	; TOSS delays
"d26=(1s/cnst31)*0.0773-p2"
"d27=(1s/cnst31)*0.2236-p2"
"d28=(1s/cnst31)*1.0433-p2"
"d29=(1s/cnst31)*0.7744-p2/2-de"
"in4=(1s/cnst31)/l5"
"in0=(1s/cnst31)*0.155"
"d0=0"
"inf1=in0"

  ze
1 10m
2 100m do:f2
  saturate, d20
          (p3 pl12 ph1):f2
          lo to saturate times l20
  d1
  rpp12				; reset 2*360deg phase supercycles
  rpp13
  rpp14
  rpp15
  (p3 pl12 ph1):f2
  (p15 pl1 ph2):f1 (p15:sp0 ph10):f2
  1u cw:f2 pl13:f2

3 d21			
  0.5u do:f2		; increase 1H dec. power during pulses
  (p22 pl11 ph12):f1	; 360deg/2 pulse
  (p22 ph13):f1		; 360deg/2 pulse
  (p22 ph14):f1		; 360deg/2 pulse
  (p22 ph15):f1		; 360deg/2 pulse
  d22 cw:f2 pl13:f2
  d22
  (p22 ph14^):f1 (1u do):f2	; 360deg/2 pulse
  (p22 ph15^):f1	; 360deg/2 pulse
  (p22 ph12^):f1	; 360deg/2 pulse
  (p22 ph13^):f1	; 360deg/2 pulse
  0.5u cw:f2 pl13:f2
  d21 			; finish 1 tR
  lo to 3 times l4
  (p1 pl11 ph7):f1	; store
  d4 do:f2		; z-filter and gamma-integral
  0.1u cpds2:f2		; TPPM decoupling during acq.
  (p1 ph8):f1		; read out

  d25			; ...
  (p2 ph3):f1
  d26
  (p2 ph4):f1
  d27
  (p2 ph5):f1
  d28
  (p2 ph6):f1
  d29 			; ... TOSS

  go=2 ph31
  1m do:f2

  id4
  lo to 2 times l5	; gamma-integral

4 dd4
  lo to 4 times l5 	; decrement d4 again

  10m mc #0 to 1 F1PH(ip7,1m iu4 & id0)
exit

ph1 = 1 3		; 1H 90deg
ph2 = 0 0 1 1 2 2 3 3 	; 13C CP
ph3 = 1 1 2 2 3 3 0 0 	; #1 180deg TOSS
ph4 = 3 3 0 0 1 1 2 2 	; #2
ph5 = 1 1 2 2 3 3 0 0 
      3 3 0 0 1 1 2 2 	; #3
ph6 = 2 2 1 1 0 0 3 3 
      0 0 3 3 2 2 1 1 	; #4
ph7 = 1 1 2 2 3 3 0 0 	; z-store after t1
ph8 = 3 3 0 0 1 1 2 2 	; read out after z-filter
ph10= 0			; 1H CP
ph11= 2

ph12=0 2 1 3 2 0 3 1  0 0 1 1 2 2 3 3	; 180degs for "spin lock"
     2 1 2 3 0 3 0 1  0 1 2 1 2 3 0 3
     3 2 1 2 3 0 3 0  1 0 1 2 1 2 3 0 	; 2nd line shifted by one
     3 0 2 1 3 2 0 3  1 0 0 1 1 2 2 3 	; 1st line shifted by one

ph13=0 0 1 1 2 2 3 3  0 2 1 3 2 0 3 1	; switch 1st 8 with 2nd 8
     0 1 2 1 2 3 0 3  2 1 2 3 0 3 0 1
     1 0 1 2 1 2 3 0 3  2 1 2 3 0 3 0
     1 0 0 1 1 2 2 3 3  0 2 1 3 2 0 3

ph14=ph12+ph11
ph15=ph13+ph11

ph31= 0 2 1 3 2 0 3 1
 


;$Id: $
