;croesyphpr
;avance-version (12/01/11)
;2D ROESY with cw spinlock for mixing
;with compensation to reduce offset effects
;phase sensitive
;
;C. Griesinger et al., J. Magn. Reson. 75, 261-271 (1987)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"d11=30m"
"d12=20u"
"d13=4u"


"in0=inf1"

"d0=in0/2-p1*4/3.1416"


1 ze
2 d11 
3 d12 pl9:f1
  d1 cw:f1 ph29
  d13 do:f1
  d12 pl1:f1
  p1 ph1
  d0 
  p1 ph4
  d13
  d12 pl11:f1
  p15 ph2:r
  d13
  d12 pl1:f1
  p1 ph4
  go=2 ph31
  d11 mc #0 to 2 F1PH(calph(ph1, +90) & calph(ph29, +90), caldel(d0, +in0))
exit


ph1=0 2 2 0 1 3 3 1 
ph2=0 2 0 2 1 3 1 3
ph4=0 2 0 2 1 3 1 3
ph29=0
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;pl11: f1 channel - power level for ROESY-spinlock
;p1 : f1 channel -  90 degree high power pulse
;p15: f1 channel - pulse for ROESY spinlock
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ

;phcor 2 : phasedifference between power levels pl1 and pl11 


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
