;decp90pr
;avance-version (17/12/14)
;calibration of 90 degree pulse on f2 channel
;1D sequence with f1 presaturation
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"d12=20u"
"d2=1s/(cnst2*2)"


1 ze
2 30m
  d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  p1 ph1
  d2
  p3:f2 ph2
  go=2 ph31
  30m mc #0 to 2 F0(zd)
exit


ph1=0 2 2 0 1 3 3 1
ph2=0 2 2 0 1 3 3 1
ph29=0
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d12: delay for power switching                      [20 usec]
;cnst2: = J(XH)
;ns: 1 * n, total number of scans: NS * TD0



;$Id:$
