;deptppnd
;avance-version (12/01/11)
;DEPT++ polarization transfer
;no decoupling during acquisition
;
;O.W. Sorensen & R.R. Ernst, J. Magn. Reson. 51, 477 (1983)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"p4=p3*2"
"d2=1s/(cnst2*2)"
"d4=1s/(cnst2*4)"


"p0=p3*cnst12"


1 ze
2 30m
  d1 
  (p3 ph1):f2
  d2
  (p4 ph2):f2 (p1 ph6):f1
  d2
  (p0 ph3):f2
  d4
  (center (p4 ph4):f2 (p2 ph7):f1 )
  d4
  (p3 ph5):f2
  d4
  (p4 ph4):f2
  d4
  go=2 ph31
  30m mc #0 to 2 F0(zd)
exit


ph1=0
ph2=0 2 1 3
ph3=1 1 1 1 3 3 3 3
ph4=0 2
ph5=0
ph6=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
    2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph7=0 2 0 2 0 2 0 2 1 3 1 3 1 3 1 3
ph31=1 1 3 3 3 3 1 1 2 2 0 0 0 0 2 2
     3 3 1 1 1 1 3 3 0 0 2 2 2 2 0 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;p0 : f2 channel :  p3 * cnst12
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d4 : 1/(4J(XH))
;cnst2: = J(XH)
;cnst12: for multiplicity selection
;           0.5 ( 45 degree pulse) - all positive
;           1.0 ( 90 degree pulse) - XH only
;           1.5 (135 degree pulse) - XH, XH3 positive, XH2 negative
;ns: 4 * n, total number of scans: NS * TD0
;ds: 8



;$Id:$
