;dipsi2esgpph
;avance-version (19/02/08)
;homonuclear Hartman-Hahn transfer using DIPSI2 sequence
;   for mixing
;phase sensitive
;water suppression using excitation sculpting with gradients
;(use parameterset DIPSI2ESGPPH)
;
;A.J. Shaka, C.J. Lee & A. Pines, J. Magn. Reson. 77, 274 (1988)
;T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"
"d11=30m"
"d12=20u"
"d13=4u"


"in0=inf1"

"d0=in0/2-p1*4/3.1416"


"TAU=de+p1*2/3.1416+4u"


"FACTOR1=(d9/(p6*115.112))/2"
"l1=FACTOR1*2"


"acqt0=0"
baseopt_echo


1 ze 
2 d11
3 d12 pl32:f1
  d1 cw:f1 ph29
  d13 do:f1
  d12 pl1:f1
  p1 ph1
  d0
  p1 ph2

  50u UNBLKGRAD
  p16:gp1
  d16 pl10:f1

						;begin DIPSI2
4 p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  
  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  lo to 4 times l1
						;end DIPSI2

  4u
  p16:gp2
  d16 pl1:f1

  p1 ph3

  p16:gp3
  d16 pl0:f1
  (p12:sp1 ph4:r):f1
  4u
  d12 pl1:f1

  p2 ph5

  4u
  p16:gp3
  d16
  TAU
  p16:gp4
  d16 pl0:f1
  (p12:sp1 ph6:r):f1
  4u
  d12 pl1:f1

  p2 ph7

  4u
  p16:gp4
  d16
  4u BLKGRAD

  go=2 ph31
  d11 mc #0 to 2 F1PH(calph(ph1, +90) & calph(ph29, +90), caldel(d0, +in0))
exit 
  

ph1=0 2
ph2=0 0 0 0 2 2 2 2
ph3=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph4=0 0 1 1
ph5=2 2 3 3
ph6=0 0 0 0 1 1 1 1 
ph7=2 2 2 2 3 3 3 3
ph23=3
ph25=1
ph29=0
ph31=0 2 2 0 0 2 2 0 2 0 0 2 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl32: f1 channel - power level for low power presaturation
;sp1 : f1 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p6 : f1 channel -  90 degree low power pulse
;p12: f1 channel - 180 degree shaped pulse (Squa100.1000)   [2 msec]
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;l1: loop for DIPSI cycle: ((p6*115.112) * l1) = mixing time
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ


;use gradient ratio:	gp 1 : gp 2 : gp 3 : gp 4
; 		           1 :    3 :   31 :   11

;for z-only gradients:
;gpz1: 1%
;gpz2: 3%
;gpz3: 31%
;gpz4: 11%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100


;set pl32 to 0W when presaturation is not required
;   use pl1 + 75 to 80dB to reduce radiation damping



;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
