;dipsi2esgpphzs
;avance-version (21/09/15)
;homonuclear Hartman-Hahn transfer using DIPSI2 sequence
;   for mixing 
;phase sensitive
;water suppression using excitation sculpting with gradients
;with zero quantum suppression 
;(use parameterset DIPSI2ESGPPH, change pulseprogram, followed by gppp and getprosol)
;
;A.J. Shaka, C.J. Lee & A. Pines, J. Magn. Reson. 77, 274 (1988)
;T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995)
;M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"
"d12=20u"


"in0=inf1"

"d0=in0/2-p1*4/PI"


"TAU=de+p1*2/PI+8u"


"FACTOR1=(d9/(p6*115.112))/2"
"l1=FACTOR1*2"


"spoffs29=0"


"acqt0=0"
baseopt_echo


1 ze 
2 d1 
3 d12 pl1:f1
  50u UNBLKGRAD

  p1 ph1
  d0
  p1 ph2

  10u gron0
  (p32:sp29 ph4):f1
  20u groff
  d16 pl10:f1

						;begin DIPSI2
4 p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  
  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  lo to 4 times l1
						;end DIPSI2

  p16:gp1
  d16
  10u gron0*1.333
  (p32*0.75:sp29 ph4):f1
  20u groff
  d16 pl1:f1
  4u

  p1 ph3

  4u 
  p16:gp3
  d16
  (p40:sp10 ph3:r):f1
  4u
  d12 pl1:f1

  p2 ph4

  4u
  p16:gp3
  d16
  TAU
  p16:gp4
  d16
  (p40:sp10 ph5:r):f1
  4u
  d12 pl1:f1

  p2 ph6

  4u
  p16:gp4
  d16
  4u BLKGRAD
  go=2 ph31
  d1 mc #0 to 2 F1PH(calph(ph1, +90), caldel(d0, +in0))
exit 
  

ph1=0 2
ph2=0 0 0 0 2 2 2 2
ph3=0 0 2 2 
ph4=0
ph5=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1 
ph6=2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3 
ph23=3
ph25=1
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;sp10: f1 channel - shaped pulse 180 degree
;sp29: f1 channel - shaped pulse (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p6 : f1 channel -  90 degree low power pulse
;p16: homospoil/gradient pulse                              [1 msec]
;p32: f1 channel - 180 degree shaped pulse (adiabatic)      [20 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;p40: f1 channel - 180 degree shaped pulse (Squa100.1000)   [2 msec]
;d0 : incremented delay (2D) = in0/2-p1*4/PI
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d12: delay for power switching                             [20 usec]
;d16: delay for homospoil/gradient recovery
;l1: loop for DIPSI cycle: ((p6*115.112) * l1) = mixing time
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ


;for z-only gradients:
;gpz0: ca. 11%
;gpz1: 31%
;gpz3: 37%
;gpz4: 17%


;use gradient files:
;gpnam1: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100



;for sweepwidth of adiabatic shape and adjusting gpz0
;   see supplementary material of M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)



;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id: $
