;dipsi2etgpsi
;avance-version (12/01/11)
;homonuclear Hartman-Hahn transfer using DIPSI2 sequence
;   for mixing
;using sensitivity improvement
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;
;J. Cavanagh & M. Rance, J. Magn. Reson. 88, 72-85 (1990)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=



#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d11=30m"


"in0=inf1"

"d0=3u"


"DELTA=p16+d16+d0"
"DELTA1=p16+d16+8u"


"FACTOR1=(d9/(p6*115.112))/2"
"l1=FACTOR1*2"


1 ze 
2 d11
3 d1 pl1:f1
  50u UNBLKGRAD
  p1 ph1
  DELTA
  p2 ph2
  d0
  p16:gp1*EA
  d16
  p1 ph3
  d20 pl10:f1

						;begin DIPSI2
4 p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  
  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  lo to 4 times l1
						;end DIPSI2

  d21 pl1:f1
  p1 ph4
  DELTA1
  p2 ph2
  4u
  p16:gp2
  d16
  4u BLKGRAD
  go=2 ph31
  d11 mc #0 to 2 F1EA(calgrad(EA) & calph(ph3, +180), caldel(d0, +in0) & calph(ph1, +180) & calph(ph31, +180))
exit 
  

ph1=0 2
ph2=0
ph3=0 0 2 2
ph4=2 2 0 0
ph23=3
ph25=1
ph31=0 2


;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p6 : f1 channel -  90 degree low power pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d20: first z-filter delay                           [10 usec]
;d21: second z-filter delay                          [10 usec]
;l1: loop for DIPSI cycle: ((p6*115.112) * l1) = mixing time
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: echo-antiecho


;use gradient ratio:	gp 1 : gp 2
; 		          30 :   30

;for z-only gradients:
;gpz1: 30%
;gpz2: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
