;dipsi2etgpsi19
;avance-version (19/02/08)
;homonuclear Hartman-Hahn transfer using DIPSI2 sequence
;   for mixing
;using sensitivity improvement
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;water suppression using 3-9-19 pulse sequence with gradients
;allowing for presaturation during relaxation delay in cases
;   of radiation damping
;(use parameterset DIPSI2ETGPSI19)
;
;J. Cavanagh & M. Rance, J. Magn. Reson. 88, 72-85 (1990)
;M. Piotto, V. Saudek & V. Sklenar, J. Biomol. NMR 2, 661 - 666 (1992)
;V. Sklenar, M. Piotto, R. Leppik & V. Saudek, J. Magn. Reson.,
;   Series A 102, 241 -245 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d11=30m"
"d12=20u"
"d13=4u"


"in0=inf1"

"d0=3u"


"DELTA=p16+d16+d0"

"TAU=p1*2/3.1416-(p0-p27)*0.231-de+46u"


"FACTOR1=(d9/(p6*115.112))/2"
"l1=FACTOR1*2"


"acqt0=0"
baseopt_echo


1 ze 
2 d11 
3 d12 pl32:f1
  d1 cw:f1 ph29
  d13 do:f1
  d12 pl1:f1
  50u UNBLKGRAD
  p1 ph1
  DELTA
  p2 ph2
  d0
  p16:gp1*EA
  d16
  p1 ph3
  d20 pl10:f1

						;begin DIPSI2
4 p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  
  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  lo to 4 times l1
						;end DIPSI2

  d21 pl1:f1
  p1 ph4
  50u pl18:f1
  p16:gp2
  d16
  p27*0.231 ph5
  d19*2
  p27*0.692 ph5
  d19*2
  p27*1.462 ph5
  d19*2
  p27*1.462 ph6
  d19*2
  p27*0.692 ph6
  d19*2
  p0*0.231 ph6
  TAU
  p16:gp3
  d16
  4u BLKGRAD
  go=2 ph31
  d11 mc #0 to 2 F1EA(calgrad(EA) & calph(ph3, +180), caldel(d0, +in0) & calph(ph1, +180) & calph(ph31, +180))
exit 
  

ph1=0 2
ph2=0
ph3=0 0 2 2
ph4=2 2 0 0
ph5=0
ph6=2
ph23=3
ph25=1
ph29=0
ph31=0 2


;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl18: f1 channel - power level for 3-9-19-pulse (watergate)
;pl32: f1 channel - power level for low power presaturation
;p0 : f1 channel -  90 degree pulse at pl18
;                      use for fine adjustment
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p6 : f1 channel -  90 degree low power pulse
;p16: homospoil/gradient pulse
;p27: f1 channel -  90 degree pulse at pl18
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;d19: delay for binomial water suppression
;     d19 = (1/(2*d)), d = distance of next null (in Hz)
;d20: first z-filter delay                           [10 usec]
;d21: second z-filter delay                          [10 usec]
;l1: loop for DIPSI cycle: ((p6*115.112) * l1) = mixing time
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: echo-antiecho


;use gradient ratio:	gp 1 : gp 2 : gp 3
; 		          30 :   20 :   50

;for z-only gradients:
;gpz1: 30%
;gpz2: 20%
;gpz3: 50%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


;set pl32 to 0W when presaturation is not required
;   use pl1 + 75 to 80dB to reduce radiation damping



;$Id:$
