;dipsi2gpphzs_ctdpe
;avance-version (21/09/15)
;homonuclear Hartman-Hahn transfer using DIPSI2 sequence
;   for mixing
;phase sensitive
;using double perfect echo
;constant time version
;with zero quantum suppression
;
;P. Sakhaii, B. Bohorc, U. Schliedermann, H. Bertold & W. Bermel,
;   J. Magn. Reson. 315, 106753 (2020)
;M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"


"d0=d21/2"
"d20=d21/2"

"in0=inf1/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA1=d21/4"


"FACTOR1=(d9/(p6*115.112))/2"
"l1=FACTOR1*2"


"spoffs29=0"


"acqt0=-p1*2/PI"


1 ze
2 d1
  20u pl1:f1
  50u UNBLKGRAD

  4u
  p16:gp1
  d16

  (p1 ph3):f1
  4u
  (p44:sp30 ph1):f1
  DELTA1
  8u
  p16:gp2
  d16
  (p44:sp30 ph1):f1
  4u
  p16:gp2
  d16 pl1:f1
  DELTA1
  (p1 ph2):f1

  d0
  (p2 ph8):f1
  d20

  (p17 pl10 ph4):f1
  (p1 pl1 ph5):f1
  DELTA1
  4u
  p16:gp3
  d16
  (p44:sp30 ph1):f1
  8u
  p16:gp3
  d16
  DELTA1
  (p44:sp30 ph1):f1
  4u
  (p1 pl1 ph7):f1

  10u gron0
  (p32:sp29 ph1):f1
  20u groff
  d16 pl10:f1

						;begin DIPSI2
4 (p6*3.556 ph23):f1
  (p6*4.556 ph25):f1
  (p6*3.222 ph23):f1
  (p6*3.167 ph25):f1
  (p6*0.333 ph23):f1
  (p6*2.722 ph25):f1
  (p6*4.167 ph23):f1
  (p6*2.944 ph25):f1
  (p6*4.111 ph23):f1
  
  (p6*3.556 ph25):f1
  (p6*4.556 ph23):f1
  (p6*3.222 ph25):f1
  (p6*3.167 ph23):f1
  (p6*0.333 ph25):f1
  (p6*2.722 ph23):f1
  (p6*4.167 ph25):f1
  (p6*2.944 ph23):f1
  (p6*4.111 ph25):f1
 
  (p6*3.556 ph25):f1
  (p6*4.556 ph23):f1
  (p6*3.222 ph25):f1
  (p6*3.167 ph23):f1
  (p6*0.333 ph25):f1
  (p6*2.722 ph23):f1
  (p6*4.167 ph25):f1
  (p6*2.944 ph23):f1
  (p6*4.111 ph25):f1
 
  (p6*3.556 ph23):f1
  (p6*4.556 ph25):f1
  (p6*3.222 ph23):f1
  (p6*3.167 ph25):f1
  (p6*0.333 ph23):f1
  (p6*2.722 ph25):f1
  (p6*4.167 ph23):f1
  (p6*2.944 ph25):f1
  (p6*4.111 ph23):f1
  lo to 4 times l1
						;end DIPSI2

  p16:gp4
  d16

  10u gron0*1.333
  (p32*0.75:sp29 ph1):f1
  20u groff
  d16 pl1:f1
  4u BLKGRAD
  (p1 ph1):f1
  go=2 ph31

  d1 mc #0 to 2
     F1PH(calph(ph4, +90) & calph(ph5, +90) & calph(ph7, +90), caldel(d0, +in0) & caldel(d20, -in20))
 
exit


ph1=0
ph2=1
ph3=0 2
ph4=1 1 3 3
ph5=1 1 3 3
ph7=0 0 2 2
ph8=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3

ph23=0
ph25=2

ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;sp29: f1 channel - shaped pulse (adiabatic)
;sp30: f1 channel - shaped pulse for broadband inversion
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p6 : f1 channel -  90 degree low power pulse
;p16: homospoil/gradient pulse                              [1 msec]
;p17: f1 channel - trim pulse                               [2.5 msec]
;p32: f1 channel - 180 degree shaped pulse (adiabatic)      [20 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;p44: f1 channel - 180 degree shaped pulse for broadband inversion
;d0 : incremented delay (2D) = d21/2
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d16: delay for homospoil/gradient recovery
;d20: incremented delay (2D) = d21/2
;l1: loop for DIPSI cycle: ((p6*115.112) * l1) = mixing time
;inf1: 1/SW = 2 * DW
;in0: 1/(2 * SW) = DW
;nd0: 2
;in20: = in0
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI


;for z-only gradients:
;gpz0: ca. 11%
;gpz1: 80%
;gpz2: 51%
;gpz3: 31%
;gpz4: 41%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100



;for sweepwidth of adiabatic shape and adjusting gpz0
;   see supplementary material of M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)




;$Id: $
