;DISPEL (four stage)
;suppression of one-bond 13C satellites 
;with a four-stage low-pass J filter	
;with f1 presaturation for solvent suppresion
;using wavemaker to set up presaturation to one or multiple solvent peaks


;set zgoptns to -D_PR1 to apply presaturation to a single solvent peak
;set zgoptns to -D_PR2 to apply presaturation to two solvent peaks
;set zgoptns to -D_PR3 to apply presaturation to three solvent peaks

;P. Moutzouri, P. Kiraly, A. R. Phillips, S. R. Coombes, M. Nilsson and G. A. Morris, Anal. Chem., 89, 11898-11901 (2017)  

;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=Suppression of one-bond 13C satellites,  run wvm -q before zg or launch with xaua 


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>

#   ifdef _PR1

create_shape(sp6, cw, name= cw, length= $cnst54 s, B1Max= $cnst53 Hz, offset= $cnst50 ppm)
"d11=30m"
"d11=30m+1s/(1+cnst50)"
"d11=30m+1s/(1+cnst53)"
"d11=30m+1s/(1+cnst54)"
"d11=30m"

#   endif

#   ifdef _PR2

create_shape(sp6, cw, name= cw2, length= $cnst54 s, B1Max= $cnst53 Hz, offset= $cnst50 ppm)
merge_shape(sp6, cw, name= cw2, length= $cnst54 s, B1Max= $cnst53 Hz, offset= $cnst51 ppm)

"d11=30m"
"d11=30m+1s/(1+cnst50)"
"d11=30m+1s/(1+cnst51)"
"d11=30m+1s/(1+cnst53)"
"d11=30m+1s/(1+cnst54)"
"d11=30m"

#   endif

#   ifdef _PR3

create_shape(sp6, cw, name= cw3,length= $cnst54 s, B1Max= $cnst53 Hz, offset= $cnst50 ppm)
merge_shape(sp6, cw, name= cw3,length= $cnst54 s, B1Max= $cnst53 Hz, offset= $cnst51 ppm)
merge_shape(sp6, cw, name= cw3,length= $cnst54 s, B1Max= $cnst53 Hz, offset= $cnst52 ppm)

"d11=30m"
"d11=30m+1s/(1+cnst50)"
"d11=30m+1s/(1+cnst51)"
"d11=30m+1s/(1+cnst52)"
"d11=30m+1s/(1+cnst53)"
"d11=30m+1s/(1+cnst54)"
"d11=30m"

#   endif


"acqt0=-p1*2/3.1416"

;"acqt0=0"
;baseopt_echo

"d10=d1-p18-d13-24u"

"p2=p1*2"
"p19=1m"

"d2=4050u"
"d3=3200u"
"d4=1100u"
"d5=3950u"
"d6=1560u"

"DELTA1=d3-d13-(p3/2)-d16-p16"
"DELTA2=d2-d3-(p3/2)-(p2/2)"
"DELTA3=d2-d3+d4-(p3/2)-(p2/2)-p16-d16"
"DELTA4=d3-d4-(p3/2)-(p1/2)"
"DELTA5=d5-p16-d16-(p1/2)-(p3/2)"
"DELTA6=d2-d5-(p3/2)-(p2/2)"
"DELTA7=d2-d5+d6-(p2/2)-(p3/2)-p16-d16"
"DELTA8=d5-d6-(p3/2)"

1 ze
2 30m
  d13 BLKGRAD
  20u pl0:f1
  d10
  4u
  p18:sp6:f1 ph29
  4u  pl1:f1 pl2:f2 
3 (p1 ph1):f1
  d13 UNBLKGRAD
  DELTA1
  p16:gp1
  d16
  (p3 ph5):f2
  DELTA2 
  (p2 ph2):f1 
  p16:gp1
  d16
  DELTA3
  (p3 ph6):f2
  DELTA4
  (p1 ph3):f1 
  DELTA5
  p16:gp2
  d16
  (p3 ph7):f2 
  DELTA6
  (p2 ph4):f1 
  p16:gp2
  d16	
  DELTA7
  (p3 ph8):f2 
  DELTA8

  if "cnst7 == 1"         ;z-filter
  {
   (p1 ph9):f1
   10u gron0 pl0:f1
   (p32:sp29 ph11):f1
   20u groff
   d16 pl1:f1
   p19:gp3
   d16
   (p1 ph10):f1
  }
  else
  {
  }
  go=2 ph31 
  30m mc #0 to 2 F0(zd)
  d13 BLKGRAD
exit
   

ph1=0 2 
ph2=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1 2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph3=1 
ph4=2 2 3 3 0 0 1 1 
ph5=0 2  
ph6=0 0 2 2
ph7=0 0 0 0 2 2 2 2
ph8=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2 
ph9=0 
ph10=0 
ph11=0
ph29=0 1
ph31=0 2 2 0 0 2 2 0 2 0 0 2 2 0 0 2
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;sp29: f1 channel - power level of adiabatic pulse of ZQF element
;sp6: f1 channel - power level of presaturation
;spnam29 : f1 channel - file name for the adiabatic shaped pulse using in ZQF   [Crp60,20,20.10]
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p32: f1 channel - 180 degree shaped pulse (adiabatic)    [20 msec]
;p16: duration of CTP gradients                      [1 msec]
;p18: f1 channel - duration of cw irradiation
;p19: homospoil gradient                             [1 msec]
;d1 : relaxation delay; 1-5 * T1
;d2 : delay to accomodate the optimized delays d3, d4, d5 and d6           [4.05 msec]
;d3 : delay that allows suppression of heteronuclear couplings             [3.2 msec]
;d4 : delay that allows suppression of heteronuclear couplings             [1.1 msec]
;d5 : delay that allows suppression of heteronuclear couplings             [3.95 msec]
;d6 : delay that allows suppression of heteronuclear couplings             [1.56 msec]
;d10: duration of relaxation delay without CW irradiation
;d11: delay for disk I/O                             [30 msec]
;d13: delay for monitoring gradient blanking/unblanking and lock hold abilities   [4 usec]
;d16: delay for gradient recovery			
;cnst7: 0 / 1 (no ZQF / ZQF)
;cnst50: offset of solvent peak1 in ppm
;cnst51: offset of solvent peak2 in ppm
;cnst52: offset of solvent peak3 in ppm
;cnst53: B1Max of presaturation in Hz
;cnst54: duration of presaturation in s (shorter than d1)
;ns: 8 * n, total number of scans: NS * TD0
;ds: 2

;use gradient ratio:    gp 0 : gp 1 : gp 2 : gp 3
;                        2-4 :   43 :   37 :   31

;for z-only gradients:
;gpz0: 2%     (ZQF gradient, 2-4%)
;gpz1: 43%    (CTP gradient)
;gpz2: 37%    (CTP gradient)
;gpz3: 31%    (homospoil gradient)

;use gradient files:
;gpnam1 : SMSQ10.100
;gpnam2 : SMSQ10.100
;gpnam3 : SMSQ10.100
