;dqseagp90
;avance-version (12/01/11)
;2D H-H correlation via double quantum spectroscopy
;phase sensitive using Echo/Antiecho gradient selection 
;90/90 degree conversion pulse
;with gradients in DQ creation period for radiation damping suppression
;
;C. Dalvit and J-M. Boehlen, J. Magn. Reson. B111, 76 (1996)
;C. Dalvit and J-M. Boehlen, J. Magn. Reson. B113, 195 (1996)
;C. Dalvit and J-M. Boehlen, J. Magn. Reson, submitted
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d4=1s/(cnst1*4)"
"d11=30m"
"d12=20u"
"d13=4u"


"in0=inf1"

"d0=3u"


"DELTA=p16+d16+d13"
"DELTA1=d0+d13"

"TAU=d4-d13-p16-d16"


1 ze
2 d11
3 d1 BLKGRAD
  50u UNBLKGRAD
  p1 ph1
  d13
  p16:gp1
  d16
  TAU
  p2 ph2
  TAU
  p16:gp1
  d16
  d13
  p1 ph2
  d0
  d13
  p16:gp2*EA
  d16
  p2 ph2
  DELTA1
  p16:gp2*-1*EA
  d16
  p1 ph2
  DELTA
  p2 ph3
  d13
  p16:gp3
  d16
  go=2 ph31
  d11 mc #0 to 2 F1EA(calgrad(EA), caldel(d0, +in0))
  d12 BLKGRAD
exit
   

ph1=0 2
ph2=0 
ph3=0 0 3 3 2 2 1 1
ph31=0 2 2 0
  

;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)HH                                       [15 msec]
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;cnst1: = J(HH)
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 1
;ns: 2 * n
;ds: >= 8
;td1: number of experiments
;FnMODE: echo-antiecho


;use gradient ratio:          gp 1 : gp 2 : gp 3
;                                1 :   15 :   60

;for z-only gradients:
;gpz1: 1%
;gpz2: 15%
;gpz3: 60%

;for magic angle gradients (MAG) with xyz-gradientsystem use also:

;gpx1: 0%
;gpx2: 15%*k
;gpx3: 60%*k

;gpy1: 0%
;gpy2: 15%*k
;gpy3: 60%*k

;   with k = calibration constant from 1D magic angle gradient
;      calibration
;   very good suppression with magic angle gradients (MAG)

;adjust MAG with pulseprogram "mqsgs1d"

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;$Id:$
