;dqsqf
;avance-version (12/01/11)
;2D correlation via double quantum coherence
;
;T.H. Mareci & R. Freeman, J. Magn. Reson. 51, 531 (1983)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=



#include <Avance.incl>


"p2=p1*2"
"d4=1s/(cnst1*4)"


"in0=inf1"

"d0=3u"


1 ze
2 d1
3 p1 ph1
  d4
  p2 ph2
  d4
  p1 ph1
  d0
  p0 ph3
  go=2 ph31
  d1 mc #0 to 2 F1QF(caldel(d0, +in0))
exit


ph1=(8) 0 4 2 6 3 7 1 5 3 7 5 1 6 2 4 0
	2 6 4 0 5 1 3 7 1 5 3 7 4 0 2 6
ph2=(8) 0 4 2 6 3 7 1 5 3 7 5 1 6 2 4 0
	2 6 4 0 5 1 3 7 1 5 3 7 4 0 2 6
	4 0 6 2 7 3 5 1 7 3 1 5 2 6 0 4
	6 2 0 4 1 5 7 3 5 1 7 3 0 4 6 2
ph3=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
    2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;p0 : f1 channel -  90 or 135 degree high power pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)
;cnst1: = J(HH)
;inf1: 1/SW = 2 * DW
;in0: 1/(2 * SW) = DW
;nd0: 1
;ns: 32 * n
;ds: 4
;td1: number of experiments
;FnMODE: QF



;$Id:$
