;dr_zg30
;avance-version (17/02/02)
;1D sequence
;using 30 degree flip angle
;for dual receive on f1 and f2
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <De.incl>


"acqt0=-p1*0.66/3.1416"


1 ze1
  ze2
  30m
2 d1
  (ralign (p1*0.33 ph1):f1 (p3*0.33 ph1):f2)
  ACQ_START1(ph30,ph31) ACQ_START2(ph30,ph31)
  0.1u DWELL_GEN1 DWELL_GEN2
  (aq1) (aq2)
  eoscnp2
  rcyc=2 
  30m wr1 #0
  30m wr2 #1
exit


ph1=0 2 2 0 1 3 3 1
ph30=0
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;ns: 1 * n, total number of scans: NS * TD0



;$Id:$
