;dstebpgp3s
;avance-version (19/02/11)
;2D sequence for diffusion measurement using double stimulated 
;   echo for convection compensation and LED
;using bipolar gradient pulses for diffusion
;using 3 spoil gradients
;
;A. Jerschow & N. Mueller, J. Magn. Reson. A 123, 222-225 (1996)
;A. Jerschow & N. Mueller, J. Magn. Reson. A 125, 372-375 (1997)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<gradient> diff=<Difframp>


"p2=p1*2"

"DELTA1=(d20-p30*6-d16*6-p19*2-p1*4-p2*2)*0.5"
"DELTA2=d21-p19-4u"


"acqt0=-p1*2/3.1416"


1 ze
2 d1
  50u UNBLKGRAD
  p1 ph1
  p30:gp6*diff
  d16
  p2 ph2
  p30:gp6*-1*diff
  d16
  p1 ph3
  p19:gp7
  DELTA1
  p1 ph4
  p30:gp6*diff
  d16
  p30:gp6*diff
  d16
  p2 ph5
  p30:gp6*-1*diff
  d16
  p30:gp6*-1*diff
  d16
  p1 ph6
  p19:gp8
  DELTA1
  p1 ph3
  p30:gp6*diff
  d16
  p2 ph8
  p30:gp6*-1*diff
  d16
  p1 ph3
  p19:gp9
  DELTA2
  4u BLKGRAD
  p1 ph3
  go=2 ph31
  d1 mc #0 to 2 F1QF(calgrad(diff))
exit


ph1= 0 0 1 1 2 2 3 3
ph2= 1 2 2 3 3 0 0 1
ph3= 0
ph4= 2 2 3 3
ph5= 3 3 0 0 3 3 0 0  0 0 1 1 0 0 1 1
ph6= 2
ph8= 0 0 0 0 0 0 0 0  0 0 0 0 0 0 0 0
     2 2 2 2 2 2 2 2  2 2 2 2 2 2 2 2
ph31=0 2 0 2 2 0 2 0  2 0 2 0 0 2 0 2


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p19: gradient pulse 2 (spoil gradient)
;p30: gradient pulse (little DELTA * 0.5)
;d1 : relaxation delay; 1-5 * T1
;d16: delay for gradient recovery
;d20: diffusion time (big DELTA)
;d21: eddy current delay (Te)			[5 ms]
;ns: 16 * n
;ds: 4 * m
;td1: number of experiments
;FnMODE: QF(no-frequency)
;        use xf2 and DOSY processing


;use gradient ratio:    gp 6 : gp 7   : gp 8   : gp 9
;                       100  : -13.17 : -17.13 : -15.37

;for z-only gradients:
;gpz6: 100%
;gpz7: -13.17% (spoil)
;gpz8: -17.13% (spoil)
;gpz9: -15.37% (spoil)

;use gradient files:   
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam8: SMSQ10.100
;gpnam9: SMSQ10.100

;use AU-program dosy to calculate gradient ramp-file Difframp

;the gradients serve the following purpose:
;   p30
;   p30		first STE dephase bipolar pulse pair
;   p19		spoiler
;   p30
;   p30		first STE rephase bipolar pulse pair
;   p30		and second STE dephase bipolar pulse pair
;   p30
;   p19		spoiler
;   p30
;   p30		second STE rephase bipolar pulse pair
;   p19		LED with spoiler



;$Id:$
