;single scan GEMSTONE experiment with 1D TOCSY

;1D homonuclear Hartman-Hahn transfer using 
;   DIPSI2 sequence for mixing
;   using selective refocussing with a shaped pulse
;with zero quantum suppression
;
;H. Kessler, H. Oschkinat, C. Griesinger & W. Bermel, J. Magn. Reson. 70, 106 (1986)
;J. Stonehouse, P. Adell, J. Keeler & A.J. Shaka, J. Am. Chem. Soc 116, 6037 (1994)
;K. Stott, J. Stonehouse, J. Keeler, T.L. Hwang & A.J. Shaka, J. Am. Chem. Soc 117, 4199-4200 (1995)
;M.J. Thrippleton & J. Keeler, Angew. Chem. Int. Ed. 42, 3938-3941 (2003)
;P. Kiraly , M. Nilsson, G.A. Morris, R.W. Adams, Chem. Commun., 57, 2368-2371 (2021)
;P. Kiraly, N. Kern, M.P. Plesniak, M. Nilsson , D.J. Procter, G.A. Morris, R.W. Adams, Angew. Chem. Int. Ed., 60, 666-669 (2021)


;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"FACTOR1=(d9/(p6*115.112))/2"
"l1=FACTOR1*2"


"spoffs29=0"
"spoffs30=0"

"d11=30m"
"d11=30m+1s/(1+cnst50)"
"d11=30m+1s/(1+cnst51)"
"d11=30m+1s/(1+cnst52)"
"d11=30m"

create_shape(sp22, rsnob, name= CSSFsel, stepSize= 10.0 us, bandwidth=$cnst50 Hz)  
create_shape(sp41, cawurst, powerIndex=80, name= CSSFb1, length=$cnst52 ms, stepSize= 0.5 us, bandwidth= $cnst51 Hz, Q=11, sweepDirection=lowToHigh)  
create_shape(sp42, cawurst, powerIndex=80, name= CSSFb2, length=$cnst52 ms, stepSize= 0.5 us, bandwidth= $cnst51 Hz, Q=11, sweepDirection=highToLow)  

"acqt0=-p1*2/PI"


1 ze
2 30m
  20u pl1:f1 BLKGRAD
  d1 pl1:f1
  50u UNBLKGRAD

  (p1 ph1):f1

  d16
  1u
  1u gron11 
  (p41:sp41 ph6):f1
  1u
  1u groff
  d16

  3u
  p16:gp1
  d16 pl0:f1
  p22:sp22:f1 ph2:r
  3u
  p16:gp1
  d16 pl1:f1

  d16
  1u
  1u gron12 
  (p42:sp42 ph7):f1
  1u
  1u groff
	
  d16 pl1:f1


  p1 ph3
  10u gron0
  (p32:sp29 ph3):f1
  20u groff
  d16 pl10:f1


                ;begin DIPSI2
4 p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  
  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  lo to 4 times l1
               ;end DIPSI2

  p16:gp2
  d16
  10u gron0*1.333
  (p32*0.75:sp29 ph3):f1
  20u groff

  d16 pl1:f1
  p1 ph3


  go=2 ph31
  30m mc #0 to 2 F0(zd)
  20u BLKGRAD
exit


ph1=0 2
ph2=0 0 1 1 2 2 3 3
ph3=0
ph6=0
ph7=0
ph23=3
ph25=1
ph31=0 2 2 0



;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;sp22: f1 channel - shaped pulse
;sp41: f1 channel - shaped pulse (adiabatic)
;sp42: f1 channel - shaped pulse (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p6 : f1 channel -  90 degree low power pulse
;p22: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                       [1 msec]
;p32: f1 channel - 180 degree shaped pulse (adiabatic)    [20 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;p41: adiabatic pulse
;p42: reverse sweep adiabatic pulse
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d16: delay for homospoil/gradient recovery
;cnst50: band-width of the band-selective RSNOB pulse in Hz
;cnst51: sweep-width of the adiabatic pulse in Hz
;cnst52: duration of the adiabatic pulse in ms [t1max/2: 50-250]
;l1: loop for DIPSI cycle: ((p6*115.112) * l1) = mixing time
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4

;for z-only gradients:
;gpz0: ca. 11%
;gpz1:     15%
;gpz2:     31%
;gpz11:   0.5%  (0.5 - 5%)
;gpz12:  -0.5%  (-gpz11%)

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


;for sweepwidth of adiabatic shape and adjusting gpz0
;   see supplementary material of M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)

;launch with xaua or run wvm -q before zg