;hacaconcaconcocahagp5d
;avance-version (21/09/15)
;(HaCa)CON(CaCO)NCO(Ca)Ha
;5D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(Ha) -> F2(Ca)  -> F2(C=O,t1) -> F3(N,t2) -> F2(Ca)
;             -> F2(C=O) -> F3(N,t3) -> F2(C=O,t4) -> F2(Ca) -> F1(H,t5)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;phase sensitive (t3)
;phase sensitive (t4)
;using semi-constant time in t1
;using semi-constant time in t2
;using semi-constant time in t4
;(use parameterset )
;
;A. Piai, T. Hosek, L. Gonnelli, A. Zawadzka-Kazimierczuk, W. Kozminski, B. Brutscher,
;   W. Bermel, R. Pierattelli & I.C. Felli, J. Biomol. NMR. 60, 209-218 (2014)
;
;$CLASS=HighRes
;$DIM=5D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"

"d4=1.7m"
"d22=4.5m"
"d23=16.6m"
"d24=14.0m"
"d27=25.0m"

#   ifdef LABEL_NOGLY
"d3=3.4m"
#   else
"d3=2.2m"
#   endif /*LABEL_NOGLY*/


"d31=3u"
"d33=3u"
"d34=3u"
"d51=3u"
"d52=3u"
"d54=3u"
"d32=d23"
"d41=d24-p14+d51+p22/2-4u"
"d42=d27+d52+p14/2"
"d44=d24-p14+p22/2-4u"

"in31=inf1/2"
"in32=inf2/2"
"in33=inf3/2"
"in34=inf4/2"

"FACTOR1=d41*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in31 ) { in41 = in31; } else { in41 = INCR1; }"
"if ( INCR1 > in31 ) { in51 = 0; } else { in51=in31-INCR1; }"

"FACTOR2=d42*10000000*2/td2"
"INCR2=FACTOR2/10000000"

"if ( INCR2 > in32 ) { in42 = in32; } else { in42 = INCR2; }"
"if ( INCR2 > in32 ) { in52 = 0; } else { in52=in32-INCR2; }"

"FACTOR4=d44*10000000*2/td4"
"INCR4=FACTOR4/10000000"

"if ( INCR4 > in34 ) { in44 = in34; } else { in44 = INCR4; }"
"if ( INCR4 > in34 ) { in54 = 0; } else { in54=in34-INCR4; }"


"DELTA1=p16+d16+8u" 
"DELTA2=d22-d3-p26*2"
"DELTA3=d24-d31-p14-p22/2"
"DELTA4=d27-d32-p14*1.5"
"DELTA5=d22-d3-p26-4u"
"DELTA6=d3-p16-d16"
"DELTA7=d4-p19-d16"
"DELTA8=d24-p14-4u"
"DELTA9=d24-p14-d22"
"DELTA10=d33*2+p8"
"DELTA11=d24-d34-p14-p22/2"

"TAU=p13-p1"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst22-cnst21)/1000000)"
"spoffs7=bf2*((cnst21-cnst22)/1000000)"
"spoffs8=0"
"spoffs9=0"
"spoffs13=bf2*((cnst26-cnst21)/1000000)"


"o1_F1=bf2*cnst21/1000000"
"o1_F4=bf2*cnst21/1000000"


1 d11 ze
  d11 pl14:f2 pl3:f3
2 d11 pl32:f1 do:f2
3 d1 cw:f1 ph29
  4u do:f1
  20u pl1:f1 fq=cnst22(bf ppm):f2

  (p1 ph1)
  d4
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  d4 UNBLKGRAD
  (p1 ph2):f1 

  p16:gp8
  d16

  (p13:sp2 ph5):f2
  d3 pl19:f1
  (p26 ph1):f1
  (p26 ph2):f1
  DELTA2 cpds1:f1 ph1
  (p14:sp7 ph1):f2
  4u
  (p24:sp9 ph1):f2
  d22
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u do:f1
  (p26 ph4):f1
  p16:gp3
  d16 fq=cnst21(bf ppm):f2
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p13:sp2 ph6):f2
  d31
  (p14:sp5 ph1):f2
  DELTA3
  (p22 ph1):f3
  d51
  (p14:sp3 ph1):f2
  d41
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph2):f2

  4u do:f1
  (p26 ph4):f1
  p16:gp4
  d16
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p21 ph7):f3
  d32
  (p14:sp3 ph1):f2
  DELTA4
  (p14:sp5 ph1):f2
  d52
  (p22 ph1):f3
  d42
  (p21 ph2):f3

  4u do:f1
  (p26 ph4):f1
  p16:gp5
  d16 fq=cnst22(bf ppm):f2
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p13:sp2 ph1):f2
  4u
  (p14:sp7 ph1):f2
  DELTA8
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  DELTA9
  (p14:sp7 ph1):f2
  d22
  (p13:sp8 ph1):f2

  4u do:f1
  (p26 ph4):f1
  p16:gp9
  d16 fq=cnst21(bf ppm):f2
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p13:sp2 ph1):f2
  d24
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d24
  (p13:sp8 ph2):f2

  4u do:f1
  (p26 ph4):f1
  p16:gp10
  d16
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p21 ph10):f3
  d33
  (p8:sp13 ph1):f2
  d33
  (p22 ph1):f3
  DELTA10
  (p21 ph1):f3

  4u do:f1
  (p26 ph4):f1
  p16:gp11
  d16
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p13:sp2 ph11):f2
  d34
  (p14:sp5 ph1):f2
  DELTA11
  (p22 ph1):f3
  d54
  (p14:sp3 ph1):f2
  d44
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph2):f2

  4u do:f1
  (p26 ph4):f1
  p16:gp12
  d16 fq=cnst22(bf ppm):f2
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p13:sp2 ph1):f2
  4u
  (p14:sp7 ph1):f2
  d22
  (p24:sp9 ph1):f2
  4u
  (p14:sp7 ph1):f2
  DELTA5
  4u do:f1
  (p26 ph4):f1
  DELTA6
  p16:gp1
  d16 pl1:f1

  (ralign (p1 ph1) (p13:sp8 ph8):f2 )
  p19:gp6
  d16
  DELTA7
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  DELTA7
  p19:gp6
  d16
  (lalign (p1 ph2) (p13:sp2 ph9):f2 )
  p19:gp7
  d16
  DELTA7
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  DELTA7
  p19:gp7
  d16
  TAU
  (p1 ph1)
  DELTA1
  (p2 ph1)
  4u
  p16:gp2
  d16 pl14:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2 
  d11 do:f2 mc #0 to 2 
     F1PH(calph(ph6, +90), caldel(d31, +in31) & caldel(d41, -in41) & caldel(d51, +in51)) 
     F2PH(calph(ph7, +90), caldel(d32, +in32) & caldel(d42, -in42) & caldel(d52, +in52))
     F3PH(calph(ph10, +90), caldel(d33, +in33))
     F4PH(calph(ph11, +90), caldel(d34, +in34) & caldel(d44, -in44) & caldel(d54, +in54))
exit


ph1=0
ph2=1 
ph3=2
ph4=3
ph5=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph6=0 2
ph7=0 0 2 2
ph8=0
ph9=3
ph10=0 0 0 0 2 2 2 2
ph11=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph29=0
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl14: f2 channel - power level for low power decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;pl32: f1 channel - power level for low power presaturation
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp9: f2 channel - shaped pulse 180 degree  (Ca on resonance)
;     sp9 requires higher selectivity - refocussing Calpha only
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p19: gradient pulse 2                                 [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse (Ca, selective)
;p26: f1 channel -  90 degree pulse at pl19
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(3J(CH))                                       [2.2 msec]
;     or 1/(2J(CH))                                    [3.4 msec]
;d4 : 1/(4J(CH))                                       [1.7 msec]
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCO))                                      [16.6 msec]
;d24: 1/(4J(NCa/NCO))                                  [14.0 msec]
;d27: 1/(4J(NCa))                                      [25.0 msec]
;d31: incremented delay (F1 in 3D)                     [3 usec]
;d32: incremented delay (F2 in 3D) = d23 
;d33: incremented delay (F3 in 3D)                     [3 usec]
;d34: incremented delay (F4 in 3D)                     [3 usec]
;d41: decremented delay (F1 in 3D) = d24-p14+d51+p22/2-4u
;d42: decremented delay (F2 in 3D) = d27+d52+p14/2
;d44: decremented delay (F4 in 3D) = d24-p14+p22/2-4u
;d51: incremented delay (F1 in 3D)                     [3 usec]
;d52: incremented delay (F2 in 3D)                     [3 usec]
;d54: incremented delay (F4 in 3D)                     [3 usec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o2p: CO chemical shift (cnst21)
;inf1: 1/SW(CO) = 2 * DW(CO)
;inf2: 1/SW(N) = 2 * DW(N)
;inf3: 1/SW(N) = 2 * DW(N)
;inf4: 1/SW(CO) = 2 * DW(CO)
;in31: 1/(2 * SW(CO)) = DW(CO)
;in32: 1/(2 * SW(N)) = DW(N)
;in33: 1/(4 * SW(N)) = DW(N)
;in34: 1/(2 * SW(CO)) = DW(CO)
;in41: = k1 * in31
;in42: = k2 * in32
;in44: = k4 * in34
;in51: = (1 - k1) * in31
;in52: = (1 - k2) * in32
;in54: = (1 - k4) * in34
;ns: 8 * n
;ds: 32
;td1: number of experiments in F1
;td2: number of experiments in F2
;td3: number of experiments in F3
;td4: number of experiments in F4
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;FnMODE: States-TPPI (or TPPI) in F3
;FnMODE: States-TPPI (or TPPI) in F4
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1%
;gpz3: 70%
;gpz4: 70%
;gpz5: 70%
;gpz6: 5%
;gpz7: 2%
;gpz8: 70%
;gpz9: 70%
;gpz10: 70%
;gpz11: 70%
;gpz12: 70%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam8: SMSQ10.100
;gpnam9: SMSQ10.100
;gpnam10: SMSQ10.100
;gpnam11: SMSQ10.100
;gpnam12: SMSQ10.100



                                          ;preprocessor-flags-start
;LABEL_NOGLY: for spectrum without Gly cross peaks start experiment with
;              option -DLABEL_NOGLY (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
