;hacaconcahgp6d
;avance-version (21/09/15)
;HaCaCONCaH
;3D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(Ha,t1) -> F2(Ca,t2) -> F2(C=O,t3) -> F3(N,t4) 
;                            -> F2(Ca,t5) -> F1(Ha,t6)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive
;using semi-constant time in t1, t3, t4 and t5
;(use parameterset )
;
;X. Yao, S. Becker & M. Zweckstetter,
;   J. Biomol. NMR 60, 231-240 (2014)
;(S. Maentylahti, M. Hellman & P. Permi, 
;   J. Biomol. NMR 49, 99-109 (2011))
;
;$CLASS=HighRes
;$DIM=6D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"

"d3=4.8m"
"d4=1.7m"
"d22=4.5m"
"d23=16.6m"
"d27=25m"
"d28=14.3m"


"p30=5m"
"p31=4.4m"


"d32=3u"
"d33=3u"
"d51=3u"
"d53=3u"
"d54=3u"
"d55=3u"

"d31=d4-p14/2"
"d34=d23"
"d35=d28-p16*2-d16*2"
"d41=d4+p14/2+d51"
"d42=d28-p14-4u"
"d43=d23-p14-4u"
"d44=d27"
"d45=d28"

"in31=inf1/2"
"in32=inf2/2"
"in33=inf3/2"
"in34=inf4/2"
"in35=inf5/2"

"FACTOR1=d41*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in31 ) { in41 = in31; } else { in41 = INCR1; }"
"if ( INCR1 > in31 ) { in51 = 0; } else { in51=in31-INCR1; }"

"in42 = in32"

"FACTOR3=d43*10000000*2/td3"
"INCR3=FACTOR3/10000000"

"if ( INCR3 > in33 ) { in43 = in33; } else { in43 = INCR3; }"
"if ( INCR3 > in33 ) { in53 = 0; } else { in53=in33-INCR3; }"

"FACTOR4=d44*10000000*2/td4"
"INCR4=FACTOR4/10000000"

"if ( INCR4 > in34 ) { in44 = in34; } else { in44 = INCR4; }"
"if ( INCR4 > in34 ) { in54 = 0; } else { in54=in34-INCR4; }"

"FACTOR5=d45*10000000*2/td5"
"INCR5=FACTOR5/10000000"

"if ( INCR5 > in35 ) { in45 = in35; } else { in45 = INCR5; }"
"if ( INCR5 > in35 ) { in55 = 0; } else { in55=in35-INCR5; }"

"td2=tdmax(td2,d42*2,in42)"


"DELTA1=p16+d16+8u" 
"DELTA2=d28-d32-d22-p14"
"DELTA3=d23-d33-p14-p22-d53"
"DELTA4=d27-d34-p14*2-d54"
"DELTA5=p16+d16-d55-p22"
"DELTA6=d3-p16-d16"
"DELTA7=d4-p19-d16"

"TAU=p13-p1"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst22-cnst21)/1000000)"
"spoffs7=bf2*((cnst21-cnst22)/1000000)"
"spoffs8=0"


"o1_F2=bf2*cnst22/1000000"
"o1_F3=bf2*cnst21/1000000"
"o1_F5=bf2*cnst22/1000000"


1 d11 ze
  d11 pl12:f2 pl3:f3
2 d11 do:f2
3 d1 pl1:f1 fq=cnst22(bf ppm):f2
  50u UNBLKGRAD

  (p1 ph5)
  d31
  (p14:sp3 ph1):f2
  d51
  (p2 ph1)
  d41
  (p1 ph2):f1 

  p16:gp8
  d16 pl19:f1

  (p13:sp2 ph6):f2
  (d3 p26 ph1 p26 ph2 4u cpds1 ph1):f1 (d32 d22 p14:sp7 ph1 DELTA2):f2 (d32 p22 ph1):f3 
  (p14:sp3 ph1):f2
  d42
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u do:f1
  (p26 ph4):f1
  p16:gp3
  d16 fq=cnst21(bf ppm):f2
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p13:sp2 ph7):f2
  d33
  (p14:sp5 ph1):f2
  DELTA3
  (p22 ph1):f3
  d53
  (p14:sp3 ph1):f2
  d43
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph2):f2

  4u do:f1
  (p26 ph4):f1
  p16:gp4
  d16
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p21 ph8):f3
  d34
  (p14:sp3 ph1):f2
  DELTA4
  (p14:sp5 ph1):f2
  d54
  (p22 ph1):f3
  d44
  (p21 ph2):f3

  4u do:f1
  (p26 ph4):f1
  20u pl10:f1
  (p17 ph1)
  (p17*2 ph2)
  4u  
  p30:gp5
  d16 pl1:f1
  (p1 ph1)
  4u  
  p31:gp5
  d16 fq=cnst22(bf ppm):f2
  4u pl19:f1
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p13:sp2 ph9):f2
  (center (p14:sp7 ph1):f2 (d45):f3 )
  (p14:sp3 ph1):f2
  d55
  (p22 ph1):f3
  DELTA5
  (
  refalign (d35):f3
  ralign (4u do p26 ph4 DELTA6):f1
  center (p14:sp7 ph1):f2
  )
  p16:gp1*EA
  d16 pl1:f1

  (ralign (p1 ph1) (p13:sp8 ph10):f2 )
  p19:gp6
  d16
  DELTA7
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  DELTA7
  p19:gp6
  d16
  (lalign (p1 ph2) (p13:sp2 ph11):f2 )
  p19:gp7
  d16
  DELTA7
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  DELTA7
  p19:gp7
  d16
  TAU
  (p1 ph1)
  DELTA1
  (p2 ph1)
  4u
  p16:gp2
  d16 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2 
  d11 do:f2 mc #0 to 2 
     F1PH(calph(ph5, +90), caldel(d31, +in31) & caldel(d41, -in41) & caldel(d51, +in51))
     F2PH(calph(ph6, +90), caldel(d32, +in32) & caldel(d42, -in42))
     F3PH(calph(ph7, +90), caldel(d33, +in33) & caldel(d43, -in43) & caldel(d53, +in53))
     F4PH(calph(ph8, +90), caldel(d34, +in34) & caldel(d44, -in44) & caldel(d54, +in54))
     F5EA(calgrad(EA) & calph(ph11, +180), caldel(d35, +in35) & caldel(d45, -in45) & caldel(d55, +in55) & calph(ph9, +180) & calph(ph31, +180))
exit


ph1=0
ph2=1 
ph3=2
ph4=3
ph5=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph7=0 0 0 0 2 2 2 2
ph8=0 2
ph9=0
ph10=0 0 2 2
ph11=3 3 1 1
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p17: f1 channel - trim pulse                          [2.5 msec]
;p19: gradient pulse 2                                 [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;p30: gradient pulse                                   [5 msec]
;p31: gradient pulse                                   [4.4 msec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(1.44*J(CH))                                   [4.8 msec]
;d4 : 1/(4J(CH))                                       [1.7 msec]
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCO))                                      [16.6 msec]
;d27: 1/(4J(NC))                                       [25.0 msec]
;d28: 1/(4J(CaCb))                                     [14.3 msec]
;d31: incremented delay (F1 in 6D) = d4-p14/2
;d32: incremented delay (F2 in 6D)                     [3 usec]
;d33: incremented delay (F3 in 6D)                     [3 usec]
;d34: incremented delay (F4 in 6D) = d23
;d35: incremented delay (F5 in 6D) = d28-p16*2-d16*2
;d41: decremented delay (F1 in 6D) = d4+p14/2+d51
;d42: decremented delay (F2 in 6D) = d28-p14-4u
;d43: decremented delay (F3 in 6D) = d23-p14-4u
;d44: decremented delay (F4 in 6D) = d27
;d45: decremented delay (F5 in 6D) = d28
;d51: incremented delay (F1 in 6D)                     [3 usec]
;d53: incremented delay (F3 in 6D)                     [3 usec]
;d54: incremented delay (F4 in 6D)                     [3 usec]
;d55: incremented delay (F5 in 6D)                     [3 usec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o2p: Calpha chemical shift (cnst22)
;inf1: 1/SW(Ha) = 2 * DW(Ha)
;inf2: 1/SW(Ca) = 2 * DW(Ca)
;inf3: 1/SW(CO) = 2 * DW(CO)
;inf4: 1/SW(N) = 2 * DW(N)
;inf5: 1/SW(Ca) = 2 * DW(Ca)
;in31: 1/(2 * SW(Ha)) = DW(Ha)
;in32: 1/(2 * SW(Ca)) = DW(Ca)
;in33: 1/(2 * SW(CO)) = DW(CO)
;in34: 1/(2 * SW(N)) = DW(N)
;in35: 1/(2 * SW(Ca)) = DW(Ca)
;in41: = k1 * in31
;in42: = in32
;in43: = k3 * in33
;in44: = k4 * in34
;in45: = k5 * in35
;in51: = (1 - k1) * in31
;in53: = (1 - k3) * in33
;in54: = (1 - k4) * in34
;in55: = (1 - k5) * in35
;ns: 8 * n
;ds: 32
;td1: number of experiments in F1
;td2: number of experiments in F2
;td3: number of experiments in F3
;td4: number of experiments in F4
;td5: number of experiments in F5
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;FnMODE: States-TPPI (or TPPI) in F3
;FnMODE: States-TPPI (or TPPI) in F4
;FnMODE: echo-antiecho in F5
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd2: decoupling according to sequence defined by cpdprg2: garp4.p61
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;cpdprg2: garp4.p61


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1%
;gpz3: 45%
;gpz4: 45%
;gpz5: 40%
;gpz6: 5%
;gpz7: 2%
;gpz8: 45%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam8: SMSQ10.100



;$Id: $
