;hacaconcanhgpwg3d
;avance-version (21/09/15)
;(HaCa)CON(CaN)H
;3D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(Ha) -> F2(Ca) -> F2(C=O,t1) -> F3(N,t2)
;             -> F2(Ca) -> F3(N) -> F1(NH,t3)
;
;on/off resonance pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;using semi-constant time in t1
;water suppression using watergate sequence
;(use parameterset )
;
;M. Hellmann, H. Piirainen, V.-P. Jaakola & P. Permi,
;   J. Biomol. NMR 58, 49-60 (2014)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"

"d3=2.2m"
"d4=1.8m"
"d21=5.5m"
"d22=4.5m"
"d23=16.0m"
"d26=2.7m"
"d27=25m"
"d28=14.3m"


"d31=3u"
"d32=3u"
"d51=3u"
"d41=d23-p14-4u"

"in31=inf1/2"
"in32=inf2/2"

"FACTOR1=d41*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in31 ) { in41 = in31; } else { in41 = INCR1; }"
"if ( INCR1 > in31 ) { in51 = 0; } else { in51=in31-INCR1; }"


"DELTA1=d22-d3-p26*2"
"DELTA2=d28-d22-p14"
"DELTA3=d28-p14-4u"
"DELTA4=d23-d31-p14-p22-d51"
"DELTA5=d32*2+p8"
"DELTA6=d27-d22-p14"
"DELTA7=d27-p14-4u"
"DELTA8=d28-d21-p26-4u"
"DELTA9=d26-p16-d16-p11-p1*2/PI-12u"
"DELTA10=d26-p16-d16-p11-de-12u"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst22)/1000000)"
"spoffs7=bf2*((cnst22-cnst21)/1000000)"
"spoffs8=0"
"spoffs13=bf2*((cnst26-cnst21)/1000000)"


"o1_F1=bf2*cnst21/1000000"


"acqt0=0"
baseopt_echo


1 d11 ze
  d11 pl16:f3 
2 d11 do:f3
3 d1
  50u UNBLKGRAD
  20u pl1:f1 pl3:f3
  30u fq=cnst22(bf ppm):f2

  (p1 ph1)
  d4
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  d4
  (p1 ph2):f1 

  (p13:sp2 ph5):f2
  d3 pl19:f1
  (p26 ph1):f1
  (p26 ph2):f1
  DELTA1 cpds1:f1 ph1
  (p14:sp5 ph1):f2
  DELTA2
  (p14:sp3 ph1):f2
  DELTA3
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u do:f1
  (p26 ph7):f1
  p16:gp1
  d16 fq=cnst21(bf ppm):f2
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph3):f2
  d31
  (p14:sp7 ph1):f2
  DELTA4
  (p22 ph1):f3
  d51
  (p14:sp3 ph1):f2
  d41
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph2):f2

  4u do:f1
  (p26 ph7):f1
  p16:gp2
  d16
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph4):f3
  d32
  (p8:sp13 ph1):f2
  d32
  (p22 ph1):f3
  DELTA5
  (p21 ph1):f3

  4u do:f1
  (p26 ph7):f1
  p16:gp3
  d16 fq=cnst22(bf ppm):f2
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph8):f2
  d22
  (p14:sp5 ph1):f2
  DELTA6
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  DELTA7
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph2):f2

  4u do:f1
  (p26 ph7):f1
  p16:gp4
  d16 fq=cnst22(bf ppm):f2
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph9):f3
  d28
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  DELTA8
  4u do:f1
  (p26 ph7):f1
  d21
  (p21 ph1):f3

  p16:gp5
  d16
  (p11:sp1 ph6):f1
  4u
  4u pl1:f1

  (p1 ph1)
  4u
  p16:gp6
  d16
  DELTA9
  (p11:sp1 ph6):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph6):f1
  4u
  DELTA10
  p16:gp6
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2
     F1PH(calph(ph3, +90), caldel(d31, +in31) & caldel(d41, -in41) & caldel(d51, +in51))
     F2PH(calph(ph4, +90), caldel(d32, +in32))
exit


ph1=0
ph2=1 
ph3=0 2
ph4=0 0 2 2
ph5=0 0 0 0 2 2 2 2
ph6=2
ph7=3
ph8=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph9=0
ph29=0
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp13: f2 channel - shaped pulse 180 degree  (adiabatic)
;spnam13: Crp60,0.5,20.1 (Crp80,0.5,20.1)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(3J(CH))                                       [2.2 msec]
;d4:  1/(4J(CH)                                        [1.8 msec]
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH)                                        [5.5 msec]
;d22: 1/(4J(CaCO))                                     [4.5 msec]
;d23: 1/(4J(NCO)                                       [16.0 msec]
;d26: 1/(4J(NH)                                        [2.7 msec]
;d27: 1/(4J'(NCa)                                      [25 msec]
;d28: 1/(4J(CaCb)                                      [14.3 msec]
;d31: incremented delay (F1 in 5D)                     [3 usec]
;d32: incremented delay (F2 in 5D)                     [3 usec]
;d41: decremented delay (F1 in 5D) = d23-p14-4u
;d51: incremented delay (F1 in 5D)                     [3 usec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o2p: Calpha chemical shift (cnst22)
;inf1: 1/SW(CO) = 2 * DW(CO)
;inf2: 1/SW(N) = 2 * DW(N)
;in31: 1/(2 * SW(CO)) = DW(CO)
;in32: 1/(2 * SW(N)) = DW(N)
;in41: = k1 * in31
;in51: = (1 - k1) * in31
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 11%
;gpz2: -7%
;gpz3: 9%
;gpz4: -13%
;gpz5: 41%
;gpz6: 31%


;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100



;$Id: $
