;hathmbcetgpl3
;avance-version (12/01/11)
;Hat-HMBC, edited HMBC + H2BC (HMQC-COSY)
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;with editing according to C multiplicity (CH + CH3 vs. CH2)
;phase sensitive using Echo/Antiecho gradient selection
;with three-fold low-pass J-filter to suppress one-bond correlations
;
;A.J. Benie & O.W. Soerensen,
;   J. Magn. Reson. 184, 315-321 (2007)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"cnst29=1/(1+sfo2/sfo1)"
"cnst30=(1-sfo2/sfo1)/(1+sfo2/sfo1)"

define list<gradient> EA1 = { cnst30 1.000 }
define list<gradient> EA2 = { cnst29 }
define list<gradient> EA3 = { 1.000 cnst30 }


"p2=p1*2"
"d0=3u"
"d4=1s/(cnst2*4)"
"d6=1s/(cnst13*2)"
"d11=30m"


"in0=inf1/2"


"DELTA1=1s/(2 * (cnst6 + 0.07 * (cnst7-cnst6) ) ) -p16-d16"
"DELTA2=1s/(cnst7 + cnst6) -p16-d16"
"DELTA3=1s/(2 * (cnst7 - 0.07 * (cnst7-cnst6) ) ) -p16-d16"
"DELTA4=d6-p16*2-d16*2-4u"
"DELTA5=d4-p16-d16-4u"
"DELTA6=d0*2+p2"
"DELTA7=d4-p16-d16"
"DELTA8=d0*2+p2+p24"


"l0=0"


1 ze 
2 d11
3 d1

  (p1 ph1)
  DELTA1 UNBLKGRAD
  p16:gp3
  d16 pl2:f2
  (p3 ph1):f2
  DELTA2
  p16:gp4
  d16
  (p3 ph1):f2
  DELTA3
  p16:gp5
  d16
  (p3 ph1):f2
  4u
  p16:gp6
  d16
  DELTA4

  if "l0 %2 == 0"
     {
     p16:gp1*EA1*-1
     d16
     (p3 ph3):f2
     4u
     p16:gp1*EA2
     d16
     DELTA5
     DELTA6
     (p24:sp7 ph4):f2
     d0
     (p2 ph1)
     d0
     DELTA7
     p16:gp1*EA2*-1
     d16 pl2:f2
     (p3 ph5):f2
     4u
     p16:gp1*EA1
     d16
     DELTA8
     }
  else
     {
     DELTA8
     p16:gp1*EA3*-1
     d16
     (p3 ph3):f2
     4u
     p16:gp1*EA2
     d16
     DELTA5
     d0
     (p2 ph1)
     d0
     (p24:sp7 ph4):f2
     DELTA6
     DELTA7
     p16:gp1*EA2*-1
     d16 pl2:f2
     (p3 ph5):f2
     4u
     p16:gp1*EA3
     d16
   }

  4u BLKGRAD
  go=2 ph31
  d11 do:f2 mc #0 to 2 
     F1I(iu0, 2)
     F1EA(calgrad(EA1) & calgrad(EA3), caldel(d0, +in0) & calph(ph3, +180) & calph(ph31, +180))
exit 
  

ph1=0
ph2=1
ph3=0 0 2 2
ph4=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph5=0 2
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;sp7: f2 channel - shaped pulse (180degree refocussing)
;spnam7: Crp60comp.4
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p24: f2 channel - 180 degree shaped pulse for refocussing
;     = 2msec for Crp60comp.4
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CH))
;d6 : delay for evolution of long range couplings
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(CH)
;cnst6: = 1J(CH)min
;cnst7: = 1J(CH)max
;cnst13: = J(CH) long range
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: echo-antiecho


;use gradient ratio:    gp 1
;                         80

;for z-only gradients:
;gpz1: 80%
;gpz3: 14%
;gpz4: -8%
;gpz5: -4%
;gpz6: -2%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100



;Processing

;use AU-program split [ipap 2] to create separate datasets

;PHC0(F1): 0 for 1st, 90 for 2nd dataset

;PH_mod(F1): pk

;use xfb and xf2m



;$Id:$
