;hbcbcgcchargp
;avance-version (21/09/15)
;(Hb)Cb(CgCC-TOCSY)Har
;2D sequence with
;   inverse correlation for triple resonance using inept transfer steps 
;
;      F1(Hb) -> F2(Cb(aro),t1) -> F2(Cg, -> Caro) -> F1(Haro,t2)
;
;on/off resonance Cbeta and Caro pulses using shaped pulse
;phase sensitive (t1)
;(use parameterset )
;
;F. Loehr, R. Haensel, V.V. Rogov & V. Doetsch, 
;   J. Biomol. NMR 37, 205-224 (2007)
;(T. Yamazaki, J.D. Forman-Kay & L.E. Kay, 
;   J. Am. Chem. Soc. 115, 11054-11055 (1993))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d11=30m"
"d12=20u"


"d4=1.7m"
"d23=9.0m"
"d25=10.4m"

#   ifdef LABEL_SEL
#   else
"d24=17.4m"
#   endif /*LABEL_SEL*/


"p19=500u"
"p30=100u"


"d0=d23/4-p30-d16-p47/2"
"d20=d23/4-p30-d16"

"in0=inf1/4"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA1=d4-p19-d16"
"DELTA2=d24/2-p14-p19-d16-4u"
"DELTA3=d24/2-p14-d25/2"
"DELTA4=d25/2-p19-d16-4u"


"spoffs2=0"
"spoffs3=0"
"spoffs8=0"
"spoffs13=bf2*((cnst24-cnst30)/2000000)"
"spoffs19=bf2*((cnst51-cnst30)/1000000)"
"spoffs20=bf2*((cnst30-cnst24)/1000000)"

#   ifdef LABEL_SEL
"spoffs21=0"
#   else
#   endif /*LABEL_SEL*/


"o1_F1=bf2*cnst30/1000000"


1 d11 ze
  d11 pl14:f2
2 d11 do:f2
3 d12 pl32:f1 pl2:f2
  
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  d12 fq=cnst30(bf ppm):f2
  50u UNBLKGRAD
  (p3 ph1):f2
  p19:gp1
  d16

  (p1 ph1)
  p19:gp2
  d16
  DELTA1
  (center (p2 ph1):f1 (p14:sp3 ph4):f2 )
  DELTA1
  p19:gp2
  d16
  (p1 ph3) 

  p19:gp3
  d16

  (p13:sp2 ph4):f2
  d20
  p30:gp4
  d16
  (center (p2 ph1):f1 (p8:sp13 ph5):f2 )
  p30:gp4
  d16
  d0
  (p47:sp19 ph1):f2
  d0
  p30:gp5
  d16
  (center (p2 ph1):f1 (p8:sp13 ph1):f2 )
  p30:gp5
  d16
  d20
  (p13:sp8 ph1):f2

  p19:gp6
#   ifdef LABEL_SEL
  d16 fq=cnst52(bf ppm):f2
#   else
  d16 fq=cnst24(bf ppm):f2
#   endif /*LABEL_SEL*/

  (p13:sp2 ph6):f2 
  4u
  (p14:sp20 ph1):f2
  p19:gp7
  d16
  DELTA2

#   ifdef LABEL_SEL
  (p48:sp21 ph7):f2
#   else
  (p14:sp3 ph7):f2
#   endif /*LABEL_SEL*/

  DELTA3
  (p14:sp20 ph1):f2
  DELTA4
  p19:gp7
  d16 pl20:f2
  4u BLKGRAD

						;begin DIPSI2:f2
4 (p45*3.556 ph23):f2
  (p45*4.556 ph25):f2
  (p45*3.222 ph23):f2
  (p45*3.167 ph25):f2
  (p45*0.333 ph23):f2
  (p45*2.722 ph25):f2
  (p45*4.167 ph23):f2
  (p45*2.944 ph25):f2
  (p45*4.111 ph23):f2
  
  (p45*3.556 ph25):f2
  (p45*4.556 ph23):f2
  (p45*3.222 ph25):f2
  (p45*3.167 ph23):f2
  (p45*0.333 ph25):f2
  (p45*2.722 ph23):f2
  (p45*4.167 ph25):f2
  (p45*2.944 ph23):f2
  (p45*4.111 ph25):f2

  (p45*3.556 ph25):f2
  (p45*4.556 ph23):f2
  (p45*3.222 ph25):f2
  (p45*3.167 ph23):f2
  (p45*0.333 ph25):f2
  (p45*2.722 ph23):f2
  (p45*4.167 ph25):f2
  (p45*2.944 ph23):f2
  (p45*4.111 ph25):f2

  (p45*3.556 ph23):f2
  (p45*4.556 ph25):f2
  (p45*3.222 ph23):f2
  (p45*3.167 ph25):f2
  (p45*0.333 ph23):f2
  (p45*2.722 ph25):f2
  (p45*4.167 ph23):f2
  (p45*2.944 ph25):f2
  (p45*4.111 ph23):f2
						;end DIPSI2:f2

  4u pl21:f1 pl22:f2
					        ;begin DIPSI2:f1, DIPSI2:f2
5 (p46*3.556 ph23):f1 (p46*3.556 ph23):f2
  (p46*4.556 ph25):f1 (p46*4.556 ph25):f2
  (p46*3.222 ph23):f1 (p46*3.222 ph23):f2
  (p46*3.167 ph25):f1 (p46*3.167 ph25):f2
  (p46*0.333 ph23):f1 (p46*0.333 ph23):f2
  (p46*2.722 ph25):f1 (p46*2.722 ph25):f2
  (p46*4.167 ph23):f1 (p46*4.167 ph23):f2
  (p46*2.944 ph25):f1 (p46*2.944 ph25):f2
  (p46*4.111 ph23):f1 (p46*4.111 ph23):f2
  
  (p46*3.556 ph25):f1 (p46*3.556 ph25):f2
  (p46*4.556 ph23):f1 (p46*4.556 ph23):f2
  (p46*3.222 ph25):f1 (p46*3.222 ph25):f2
  (p46*3.167 ph23):f1 (p46*3.167 ph23):f2
  (p46*0.333 ph25):f1 (p46*0.333 ph25):f2
  (p46*2.722 ph23):f1 (p46*2.722 ph23):f2
  (p46*4.167 ph25):f1 (p46*4.167 ph25):f2
  (p46*2.944 ph23):f1 (p46*2.944 ph23):f2
  (p46*4.111 ph25):f1 (p46*4.111 ph25):f2

  (p46*3.556 ph25):f1 (p46*3.556 ph25):f2
  (p46*4.556 ph23):f1 (p46*4.556 ph23):f2
  (p46*3.222 ph25):f1 (p46*3.222 ph25):f2
  (p46*3.167 ph23):f1 (p46*3.167 ph23):f2
  (p46*0.333 ph25):f1 (p46*0.333 ph25):f2
  (p46*2.722 ph23):f1 (p46*2.722 ph23):f2
  (p46*4.167 ph25):f1 (p46*4.167 ph25):f2
  (p46*2.944 ph23):f1 (p46*2.944 ph23):f2
  (p46*4.111 ph25):f1 (p46*4.111 ph25):f2

  (p46*3.556 ph23):f1 (p46*3.556 ph23):f2
  (p46*4.556 ph25):f1 (p46*4.556 ph25):f2
  (p46*3.222 ph23):f1 (p46*3.222 ph23):f2
  (p46*3.167 ph25):f1 (p46*3.167 ph25):f2
  (p46*0.333 ph23):f1 (p46*0.333 ph23):f2
  (p46*2.722 ph25):f1 (p46*2.722 ph25):f2
  (p46*4.167 ph23):f1 (p46*4.167 ph23):f2
  (p46*2.944 ph25):f1 (p46*2.944 ph25):f2
  (p46*4.111 ph23):f1 (p46*4.111 ph23):f2
					        ;end DIPSI2:f1, DIPSI2:f2

  4u pl14:f2 
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 
     F1PH(calph(ph4, -90), caldel(d0, +in0) & caldel(d20, -in20)) 
exit


ph1=0
ph2=1
ph3=1 3
ph4=0 0 2 2
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
    1 1 1 1 1 1 1 1 3 3 3 3 3 3 3 3
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph7=0 0 2 2 1 1 3 3
ph23=0
ph25=2
ph29=0
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl14: f2 channel - power level for low power decoupling
;pl20: f2 channel - power level for (hetero) TOCSY-spinlock (high sel.)
;pl21: f1 channel - power level for hetero TOCSY-spinlock (med. sel.)
;pl22: f2 channel - power level for hetero TOCSY-spinlock (med. sel.)
;         to match p46/pl21
;pl32: f1 channel - power level for low power presaturation
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp13: f2 channel - shaped pulse 180 degree  (adiabatic)
;sp19: f2 channel - shaped pulse 180 degree  (Calpha(aro) off resonance, Iburp2.1000)
;sp20: f2 channel - shaped pulse 180 degree  (Cbeta(aro) off resonance, p14)
;sp21: f2 channel - shaped pulse 180 degree  (on resonance, Reburp.1000)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p19: gradient pulse 2                                 [500 usec]
;p30: gradient pulse 3                                 [100 usec]
;p45: f2 channel -  90 degree pulse at pl20 (TOCSY, high sel.)
;p46: f1 channel -  90 degree pulse at pl21 (hetero TOCSY, med. sel.)
;     f2 channel -  90 degree pulse at pl22 (hetero TOCSY, med. sel.)
;p47: f2 channel - 180 degree shaped pulse for inversion
;                      Iburp2.1000               (2.1ms at 600.13 MHz)
;p48: f2 channel - 180 degree shaped pulse for inversion
;                      Reburp.1000               (3.3ms at 600.13 MHz)
;p61: f2 channel - 90 degree pulse for low power decoupling
;d0 : incremented delay (2D) = d23/4-p30-d16-p47/2
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(HbCb))                                     [1.7 msec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1) = d23/4-p30-d16
;d23: 1/(2J'(CbCg)) and 5/(4J'(HbCb))                  [9.0 msec]
;d24: 1/(J(CgCd))
;     Phe, Trp                                         [11.5 msec]
;     Tyr                                              [15.0 msec]
;     all                                              [17.4 msec]
;d25: 1/(2J(CbCg))                                     [10.4 msec]
;cnst24: Caromatic chemical shift (offset, in ppm)     [130 ppm]
;cnst30: Cbeta(aro) chemical shift (offset, in ppm)    [35 ppm]
;cnst51: Calpha(aro) chemical shift (offset, in ppm)   [59 ppn]
;cnst52: Caromatic chemical shift (offset, in ppm)
;           Phe                                        [141 ppm]
;           Trp                                        [111 ppm]
;           Tyr                                        [129 ppm]
;o2p: Cbeta(aro) chemical shift (cnst30)
;inf1: 1/SW(Cb) = 2 * DW(Cb)
;in0: 1/(4 * SW(Cb)) =  (1/2) DW(Cb)
;nd0: 4
;in20: = in0
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1       td1 max = 2 * d20 / in20
;FnMODE: States-TPPI (or TPPI) in F1
;cpd2: decoupling according to sequence defined by cpdprg2 : garp4.p61
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients
;gpz1: 11%
;gpz2: 9%
;gpz3: 14%
;gpz4: 14%
;gpz5: 10%
;gpz6: 19%
;gpz7: 12%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.20
;gpnam5: SMSQ10.20
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100


;set pl32 to 0W when presaturation is not required
;   use pl1 + 75 to 80dB to reduce radiation damping


;Processing

;phase correction in F1 required (BS)



;$Id: $
