;hbcbcgcdcehegp
;avance-version (21/09/15)
;(Hb)Cb(CgCd)Hd
;2D sequence with
;   inverse correlation for triple resonance using inept transfer steps 
;
;      F1(H) -> F2(Cb(aro),t1) -> F2(Cg, -> Cd -> Ce) -> F1(H,t2)
;
;on/off resonance Cbeta and Caro pulses using shaped pulse
;phase sensitive (t1)
;(use parameterset HBCBCGCDCEHEGP)
;
;T. Yamazaki, J.D. Forman-Kay & L.E. Kay, 
;   J. Am. Chem. Soc. 115, 11054-11055 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d11=30m"
"d12=20u"


"d3=1.8m"
"d4=1.7m"
"d21=1.25m"
"d22=4.4m"
"d23=2.7m"
"d25=2.1m"
"d27=1.4m"
"d28=3.8m"


"p19=500u"


"d0=d22-d3-4u"
"d20=d22-p14-4u"

"in0=inf1/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA=p27*2.385+d19*5-p14/2"
"DELTA1=d4-p16-d16"
"DELTA2=d3-p14-4u"
"DELTA3=d23-p14-p16-d16-4u"
"DELTA4=d28-p16-d16"
"DELTA5=d25-p19-d16"
"DELTA6=d25-d27-p19-d16"
"DELTA7=d21-p19-d16-p27*2.385-d19*5"
"DELTA8=d21-p19-d16-p27*2.154-p0*0.231-d19*5"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst24-cnst30)/1000000)"
"spoffs7=bf2*((cnst30-cnst24)/1000000)"
"spoffs8=0"
"spoffs9=0"


"o1_F1=bf2*cnst30/1000000"


1 d11 ze
  d11 pl12:f2
2 d11 do:f2
3 d12 pl10:f1
  (p17*2 ph1):f1
  (p17 ph2):f1
  d12 pl1:f1 pl2:f2

  d1 fq=cnst30(bf ppm):f2
  50u UNBLKGRAD
  (p3 ph1):f2
  p16:gp1
  d16

  (p1 ph1)
  p16:gp2
  d16
  DELTA1
  (center (p2 ph1):f1 (p14:sp3 ph1):f2 )
  DELTA1
  p16:gp2
  d16
  (p1 ph2) 

  (p13:sp2 ph3):f2
  4u
  (p14:sp5 ph1):f2
  DELTA2 pl19:f1
  4u cpds1:f1 ph2
  d0
  (p24:sp9 ph4):f2
  4u
  (p14:sp5 ph1):f2 
  d20
  (p13:sp8 ph1):f2

  4u do:f1
  (p26 ph1):f1
  d12 fq=cnst24(bf ppm):f2
  p16:gp3
  d16

  (p13:sp2 ph5):f2 
  4u
  (p14:sp7 ph1):f2
  p16:gp4
  d16
  DELTA3
  (p14:sp3 ph1):f2
  4u
  (p14:sp7 ph1):f2
  DELTA3
  p16:gp4
  d16

  (p13:sp8 ph1):f2

  p16:gp5
  d16
  DELTA4
  (p14:sp3 ph1):f2
  DELTA4
  p16:gp5
  d16

  (p13:sp2 ph1):f2

  p19:gp6
  d16
  DELTA5
  (p14:sp3 ph1):f2
  DELTA6
  p19:gp6
  d16 pl1:f1
  (p2 ph1):f1
  d27 
  (p13:sp8 ph1):f2

  p16:gp7
  d16 pl0:f1
  (p11:sp1 ph1:r):f1
  4u
  4u pl1:f1

  (p1 ph1):f1
  4u
  p19:gp8
  d16
  DELTA7 pl18:f1
  
  (p27*0.231 ph1 d19*2 p27*0.692 ph1 d19*2 p27*1.462 ph1 d19*2 p27*1.462 ph6 d19*2 p27*0.692 ph6 d19*2 p0*0.231 ph6) (DELTA p14:sp3 ph1):f2

  DELTA8
  p19:gp8
  d16 pl12:f2 
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20)) 
exit


ph1=0
ph2=1
ph3=0
ph4=0 1 2 3
ph5=0 0 0 0 2 2 2 2
ph6=2
ph31=0 2 0 2 2 0 2 0


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;pl18: f1 channel - power level for 3-9-19-pulse (watergate)
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (Caro off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Cb off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp9: f2 channel - shaped pulse 180 degree  (Cb on resonance)
;     sp9 requires higher selectivity than sp3 (Cb only)
;p0 : f1 channel -  90 degree pulse at pl18
;                      use for fine adjustment
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p17: f1 channel - trim pulse                          [2.5 msec]
;p19: gradient pulse 2                                 [500 usec]
;p24: f2 channel - 180 degree shaped pulse (sp9)
;p26: f1 channel -  90 degree pulse at pl19
;p27: f1 channel -  90 degree pulse at pl18
;d0 : incremented delay (F1) = d22-d3-4u
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(3J'(HbCb))                                    [1.8 msec]
;d4 : 1/(4J(HbCb))                                     [1.7 msec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d19: delay for binomial water suppression
;     d19 = (1/(2*d)), d = distance of next null (in Hz)
;d20: decremented delay (F1) = d22-p14-4u
;d21: 1/(4J'(HeCe))                                    [1.25 msec]
;d22: 1/(4J(CbCg))                                     [4.4 msec]
;d23: 1/(4J'(CbCg)) and 1/(4J(CgCd))                   [2.7 msec]
;d25: 1/(4J'(CdCe))                                    [2.1 msec]
;d27: 1/(4J(HeCe))                                     [1.4 msec]
;d28: 1/(4J'(CgCd)) and 1/(4J(CdCe))                   [3.8 msec]
;cnst24: Caromatic chemical shift (offset, in ppm)
;cnst30: Cbeta chemical shift (offset, in ppm)
;inf1: 1/SW(Cb) = 2 * DW(Cb)
;in0: 1/(2 * SW(Cb)) =  DW(Cb)
;nd0: 2
;in20: = in0
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1       td1 max = 2 * d20 / in20
;FnMODE: States-TPPI (or TPPI) in F1
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:  gp 1:gp 2:gp 3:gp 4: gp 5:gp 6:gp 7:gp 8
;                       30:   2:  80:   7:    9:   3: -60:  15

;for z-only gradients
;gpz1: 30%
;gpz2: 2%
;gpz3: 80%
;gpz4: 7%
;gpz5: 9%
;gpz6: 3%
;gpz7: -60%
;gpz8: 15%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam8: SMSQ10.100



;$Id: $
