;hcacongpwg3d
;avance-version (21/09/15)
;(HCA)CONH
;3D sequence with
;   inverse correlation for triple resonance using multiple
;      inept and HMQC steps
;
;      F1(H) -> F2(Ca) -> F2(C=O,HMQC,t1) 
;                      -> F3(N,t2) -> F1(H,t3)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t2
;water suppression using watergate sequence
;(use parameterset )
;
;R. Folmer & G. Otting, J. Biomol. NMR 16, 229-233 (2000)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define loopcounter TD1_MAX
define loopcounter TD2_MAX


"p2=p1*2"
"p22=p21*2"
"d11=30m"

"d3=1.16m"
"d4=1.5m"
"d21=5.5m"
"d22=4.5m"
"d23=12.4m"
"d26=2.3m"


"d0=3u"
"d10=d23/2-p14/2"
"d20=(d23-d22*2-p13-p14-d0-larger(p14,p22)/2)/2"
"d29=d23/2-p14/2-p26-d21-4u"
"d30=d23/2-p14/2"

"in0=inf1/2"
"in10=inf2/4"

"in20=in0/2"
"in29=in10"
"in30=in10"

"td1=tdmax(td1,d20*2,in20)"
"td2=tdmax(td2,d30*2,in30)"


"DELTA1=d4-p16-d16-4u"
"DELTA2=d26-p19-d16-p11-12u"


"spoffs2=0"
"spoffs3=0"
"spoffs4=bf2*((cnst22-cnst21)/1000000)"
"spoffs5=bf2*((cnst22-cnst21)/1000000)"
"spoffs6=bf2*((cnst22-cnst21)/1000000)"
"spoffs8=0"


aqseq 321


"TD1_MAX=(d23*2-p13*2-p14-d22)/in0"
"TD2_MAX=d30*2/in30"
"l31=TD1_MAX+TD2_MAX"


1 d11 ze
2 d11 do:f3
3 d1 fq=cnst21(bf ppm):f2 
  20u pl1:f1 pl3:f3
  50u UNBLKGRAD

  (p1 ph1):f1
  4u
  p16:gp1
  d16
  DELTA1
  (center (p2 ph1) (p14:sp5 ph1):f2 )
  4u
  DELTA1
  p16:gp1
  d16
  (p1 ph4):f1

  (p13:sp4 ph1):f2

  if "d20 > 4u"
     {
     4u
     (
     refalign (d23 p22 ph1 d23):f3
     lalign (d3 p2 ph1):f1
     center (p14:sp3 ph1 d20 d22*2 p13:sp2 ph5:r d0 p14:sp5 ph1 d0 p13:sp8 ph1 d22*2 d20 p14:sp3 ph1):f2 
     )
     4u
     }
  else
     {
     4u
     (
     refalign (d23 p22 ph1 d23):f3
     lalign (d3 p2 ph1):f1
     center (p13:sp2 ph5:r d0 p14:sp5 ph1 d0 p13:sp8 ph1):f2 
     )
     4u
     }

  (p13:sp6 ph1):f2

  4u
  p16:gp2
  d16 pl19:f1
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph6):f3
  d30
  (p14:sp3 ph1):f2
  d30
  (center (p14:sp5 ph1):f2 (p22 ph7):f3 )
  d10
  (p14:sp3 ph1):f2
  d29
  4u do:f1
  (p26 ph4):f1
  d21
  (p21 ph1):f3

  p16:gp3
  d16 pl0:f1
  (p11:sp1 ph3):f1
  4u
  4u pl1:f1

  (p1 ph1) 
  4u
  p19:gp4
  d16
  DELTA2 pl0:f1
  (p11:sp1 ph3):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u pl0:f1
  (p11:sp1 ph3):f1
  4u
  DELTA2
  p19:gp4
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3 
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph5, +90), caldel(d0, +in0) & caldel(d20, -in20)) 
     F2PH(calph(ph6, -90), caldel(d10, +in10) & caldel(d29, +in29) & caldel(d30, -in30))
;99 1m
exit


ph1=0
ph2=1
ph3=2
ph4=3
ph5=0 2
ph6=0 0 2 2
ph7=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph31=0 2 2 0 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp4: f2 channel - shaped pulse  90 degree  (Ca off resonance)
;sp5: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp6: f2 channel - shaped pulse  90 degree  (Ca off resonance)
;                  for time reversed pulse
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p19: gradient pulse 2                                 [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(HCa))                                      [1.16 msec]
;d4 : 1/(4J(HCa))                                      [1.5 msec]
;d10: incremented delay (F2 in 3D) =  d23/2-p14/2
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = (d23-d22*2-p13-p14-d0-larger(p14,p22)/2)/2
;d21: 1/(2J(NH)                                        [5.5 msec]
;d22: 1/(4J(CaCO)                                      [4.5 msec]
;d23: 1/(4J(NCa)                                       [12.4 msec]
;d26: 1/(4J'(NH)                                       [2.3 msec]
;d29: incremented delay (F2 in 3D) = d23/2-p14/2-p26-d21-4u
;d30: decremented delay (F2 in 3D) = d23/2-p14/2
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o2p: CO chemical shift (cnst21)
;inf1: 1/SW(CO) = 2 * DW(CO)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(CO)) = DW(CO)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in20: = in0/2
;in29: = in10
;in30: = in10
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1       td1 max = (d23*2-p13*2-p14) / in0
;td2: number of experiments in F2       td2 max = d30*2 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 40%
;gpz3: 60%
;gpz4: 60%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100



;$Id: $
