;hcbcacongp3d
;avance-version (21/09/15)
;(H)CBCA(CO)N
;3D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(H) -> F2(Caliph.,t1 -> Ca) -> F2(C=O) -> F3(N, t2)
;            -> F2(C=O) -> F2(Ca) -> F1(H,t3)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t1
;(use parameterset HCBCACONHGP3D)
;
;(V. Kanelis, L. Donaldson, D.R. Muhandiram, D. Rotin,
;   J.D. Foreman-Kay & L.E. Kay, J. Biomol. NMR 16, 253-259 (2000))
;(A.C. Wang, S. Grzesiek, R. Tschudin, P.J. Lodi & A. Bax,
;   J. Biomol. NMR 5, 376-382 (1995))
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include<Avance.incl>
#include<Grad.incl>
#include<Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=1.1m"
"d4=1.6m"
"d22=3.6m"
"d23=12.0m"
"d27=4.2m"
"d28=3.6m"


"p30=5m"
"p31=4.4m"


"d0=3u"
"d10=3u"
"d20=d28+d0-p14-4u"

"in0=inf1/2"
"in10=inf2/4"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA=d10*2+p8"
"DELTA1=d28-d3-larger(p14,p22)-p2"
"DELTA2=d22-p14-4u"
"DELTA3=d27-p14-4u"
"DELTA4=d27-d3-p2-p14-4u"
"DELTA5=d4-8u"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst23)/1000000)"
"spoffs7=bf2*((cnst21-cnst22)/1000000)"
"spoffs8=0"
"spoffs9=0"
"spoffs13=bf2*((cnst26-cnst21)/1000000)"


"o1_F1=bf2*cnst23/1000000"


aqseq 312


1 ze
  d11 pl12:f2
2 d11 do:f2
3 d1 fq=cnst23(bf ppm):f2
  d12 pl1:f1 pl0:f2 pl3:f3

  (p1 ph1):f1
  d4
  (center (p2 ph1):f1 (p14:sp3 ph1):f2 )
  d4 UNBLKGRAD
  (p1 ph2):f1

  (p13:sp2 ph3):f2
  d0
  (center (p14:sp5 ph1):f2 (p22 ph1):f3 )
  d3
  (p2 ph9)
  DELTA1 pl19:f1
  (p14:sp3 ph1):f2
  d20
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u cpds1:f1 ph2
  (p14:sp5 ph1):f2
  DELTA2
  (p14:sp3 ph1):f2
  4u
  (p14:sp5 ph1):f2
  DELTA2
  (p13:sp2 ph1):f2

  4u do:f1
  (p26 ph8):f1
  p16:gp1
  d16 fq=cnst21(bf ppm):f2
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph1):f2
  d23
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p13:sp8 ph2):f2

  (p21 ph5):f3
  d10
  (p8:sp13 ph7):f2
  d10
  (p22 ph1):f3
  DELTA
  (p21 ph1):f3

  (p13:sp2 ph1):f2
  d23
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p13:sp8 ph2):f2

  4u do:f1
  (p26 ph6):f1
  4u
  20u pl10:f1
  (p17*2 ph1)
  (p17 ph2)
  p30:gp2
  d16 pl1:f1
  (p1 ph1)
  p31:gp3
  d16 fq=cnst22(bf ppm):f2

  (p13:sp2 ph4):f2
  4u
  (p14:sp7 ph1):f2
  DELTA3
  (p24:sp9 ph1):f2
  4u
  (p14:sp7 ph1):f2
  DELTA4 pl1:f1
  (p2 ph1)
  d3
  (p13:sp8 ph1):f2

  p16:gp4
  d16

  (p1 ph1):f1
  d4
  (center (p2 ph2):f1 (p14:sp3 ph1):f2 )
  4u
  DELTA5 pl12:f2
  4u BLKGRAD
  (p1 ph1):f1
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20)) 
     F2PH(calph(ph5, +90), caldel(d10, +in10))
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph5=0 0 2 2
ph6=3
ph7=0 0 0 0 2 2 2 2
ph8=2
ph9=0 0 2 2
ph31=0 2 2 0 0 2 2 0 2 0 0 2 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp2 : f2 channel - shaped pulse  90 degree  (on resonance)
;sp3 : f2 channel - shaped pulse 180 degree  (on resonance)
;sp5 : f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp7 : f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8 : f2 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp9 : f2 channel - shaped pulse 180 degree  (Ca on resonance)
;      sp9 requires higher selectivity than sp3 (Ca only)
;sp13: f2 channel - shaped pulse 180 degree  (Ca and C=O, adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse (Ca and C=O, adiabatic)
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p17: f1 channel - trim pulse                          [2.5 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse (sp9)
;p26: f1 channel -  90 degree pulse at pl19
;p30: gradient pulse 2                                 [5 msec]
;p31: gradient pulse 3                                 [4.4 msec]
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(HCa))                                      [1.1 msec]
;d4 : 1/(4J(HCa))                                      [1.6 msec]
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d28+d0-p14-4u
;d22: 1/(4J'(COCa)                                     [3.6 msec]
;d23: 1/(4J(NCO)                                       [12 msec]
;d27: 1/(4J(COCa)                                      [4.2 msec]
;d28: 1/(8J(CaCb))                                     [3.6 msec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;cnst26: Call chemical shift (offset, in ppm)          [101 ppm]
;o2p: Caliphatic chemical shift (cnst23)
;inf1: 1/SW(Cali) = 2 * DW(Cali)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Cali)) =  DW(Cali)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in20: = in0
;ns: 4 * n
;ds: >= 16
;td1: number of experiments in F1       td1 max = 2 * d20 / in20
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:   	gp 1 : gp 2 : gp 3 : gp 4
;			  40 :   60 :   60 :  -50

;for z-only gradients
;gpz1: 40%
;gpz2: 60%
;gpz3: 60%
;gpz4: -50%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100



;$Id: $
