;hccccosygp3d
;avance-version (21/09/15)
;soft HCCC-E.COSY
;3D sequence with
;   inverse correlation using multiple inept transfer and
;
;      F1(H) -> F2(Ca,t1) -> F2(Cb) -> F2(Cg,t2) -> F1(Hg,t3)
;
;for determination of 3J CgC' (Chi1) using E.COSY
;   splitting in F1:  CaC'
;   splitting in F2:  CgC'
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho gradient selection (t2)
;using constant time in t1
;
;H. Schwalbe, A. Rexroth, U. Eggenberger, T. Geppert &
;   C. Griesinger, J. Am. Chem. Soc. 115, 7878-7879 (1993)
;Y. Karimi-Nejad, J.M. Schmidt, H. Rueterjans, H. Schwalbe &
;   C. Griesinger, Biochemistry 33, 5481-5492 (1994)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d4=1.7m"
"d21=1.38m"
"d23=7.2m"
"d24=4.3m"


"d0=3u"
"d10=3u"

"d20=d23"

"in0=inf1/2"
"in10=inf2/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA1=d4-larger(p2,p24)/2"
"DELTA2=d4*2"
"DELTA3=d23-d0"
"DELTA4=d21+d10*2+larger(p2,p22)+8u"
"DELTA5=d21-p16-d16"
"DELTA6=d4-p16-d16-4u"


"spoffs2=0"
"spoffs3=0"
"spoffs8=0"
"spoffs15=0"
"spoffs16=bf2*(cnst22/1000000)-o2"


aqseq 321


1 d11 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  50u UNBLKGRAD

  (p1 ph1)
  DELTA1
  (center (p2 ph1) (p24:sp16 ph1):f2 )
  DELTA1 pl3:f3

#   ifdef TRIMP
  (p28 ph1)
#   endif /* TRIMP */

  (p1 ph2)

  p16:gp1
  d16

  (p13:sp2 ph3):f2
  (DELTA2 pl19 20u cpds1):f1 (d0 DELTA3 p14:sp3 ph4 d20):f2 (d0 p22 ph1):f3

  (p13:sp8 ph1):f2

  d24
  (p14:sp3 ph1):f2
  d24

  (p13:sp2 ph5):f2

  DELTA4
  (p14:sp3 ph1):f2
  4u do:f1
  4u pl1:f1
  d10
  (center (p2 ph1):f1 (p22 ph1):f3 )
  d10
  p16:gp2*EA
  d16
  DELTA5 pl1:f1
  (p13:sp8 ph6):f2

  (p1 ph1) 
  d4
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  DELTA6
  p16:gp3
  d16 pl12:f2 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd2:f2 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20)) 
     F2EA(calgrad(EA), caldel(d10, +in10) & calph(ph6, +180) & calph(ph31, +180))
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph5=0 0 0 0 1 1 1 1 0 0 0 0 1 1 1 1
    2 2 2 2 3 3 3 3 2 2 2 2 3 3 3 3
ph6=0 0 2 2
ph29=0
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp2 : f2 channel - shaped pulse  90 degree  (Cali on resonance)
;sp3 : f2 channel - shaped pulse 180 degree  (Cali on resonance)
;sp8 : f2 channel - shaped pulse  90 degree  (Cali on resonance)
;                  for time reversed pulse
;sp15: f2 channel - shaped pulse 180 degree for decoupling
;                                           (Cali on resonance)
;sp16: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;     sp16 requires higher selectivity - refocussing Calpha only
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse (Ca, selective)
;p28: f1 channel - trim pulse                          [1 msec]
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CH))                                       [1.7 msec]
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d23
;d21: 1/(5J'(CH))                                      [1.38 msec]
;d23: 1/(4J(CC))                                       [7.2 msec]
;d24: 1/(6.65J'(CC))                                   [4.3 msec]
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o2p: Caliphatic chemical shift (cnst23)
;inf1: 1/SW(Cali) = 2 * DW(Cali)
;inf2: 1/SW(Cali) = 2 * DW(Cali)
;in0: 1/(2 * SW(Cali)) = DW(Cali)
;nd0: 2
;in10: 1/(2 * SW(Cali)) = DW(Cali)
;nd10: 2
;in20: = in0
;ns: 16 * n
;ds: 32
;td1: number of experiments in F1       td1 max = 2 * d20 / in20
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd2: decoupling according to sequence defined by cpdprg2 : mlevsp180
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd2: f2 channel - 180 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 30%
;gpz2: 80%
;gpz3: 20.1%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
