;hcchcosygp3d
;avance-version (21/09/15)
;soft HCCH-E.COSY
;3D sequence with
;   inverse correlation using multiple inept transfer and
;
;      F1(H,t1) -> F2(Ca,t2) -> F2(Cb) -> F1(Hb,t3)
;
;for determination of 3J HbC' (Chi1) using E.COSY
;   splitting in F2:  CaC'
;   splitting in F3:  HbC'
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho gradient selection (t2)
;using constant time in t2
;(use parameterset HCCHCOSYGP3D)
;
;Y. Karimi-Nejad, J.M. Schmidt, H. Rueterjans, H. Schwalbe &
;   C. Griesinger, Biochemistry 33, 5481-5492 (1994)
;U. Eggenberger, Y. Karimi-Nejad, H. Thuering, H. Rueterjans &
;   C. Griesinger, J. Biomol. NMR 2, 583-590 (1992)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d4=1.7m"
"d21=1.7m"
"d23=7.2m"
"d24=3.6m"


"d0=3u"
"d10=3u"
"d29=d23*2+p14-p16*2-d16*2-d10-p22-8u"
"d30=d23"

"in0=inf1/2"
"in10=inf2/2"

"in29=in10"
"in30=in10"

"td2=tdmax(td2,d30*2,in30)"


"DELTA1=d4-p24/2"
"DELTA2=d4+d0*2+p24/2"
"DELTA3=d21-p16-d16-4u"
"DELTA4=d23-p16-d16-d10-4u"
"DELTA5=d24-d21-4u"
"DELTA6=d4-p16-d16-4u"


"spoffs4=bf2*(cnst23/1000000)-o2"
"spoffs7=bf2*(cnst23/1000000)-o2"
"spoffs9=0"
"spoffs15=bf2*(cnst23/1000000)-o2"


aqseq 321


1 d11 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  50u UNBLKGRAD

  (p1 ph3)
  DELTA1
  d0
  (p24:sp9 ph1):f2
  d0
  (p2 ph1)
  DELTA2 pl3:f3

#   ifdef TRIMP
  (p28 ph1)
#   endif /* TRIMP */

  (p1 ph2)

  p16:gp1
  d16

  (p13:sp4 ph4):f2
  4u
  p16:gp2*EA
  d16
  (DELTA3 pl19 20u cpds1):f1 (d10 DELTA4 p14:sp7 ph7 d30):f2 (d10 p22 ph1 d29 p22 ph1):f3

  (p13:sp4 ph6):f2

  d24
  (p14:sp7 ph1):f2
  DELTA5
  4u do:f1
  d21 pl1:f1
  (p13:sp4 ph5):f2

  (p1 ph1) 
  d4
  (center (p2 ph1) (p14:sp7 ph1):f2 )
  DELTA6
  p16:gp3
  d16 pl12:f2 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd2:f2 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90) & calph(ph29, +90), caldel(d0, +in0)) 
     F2EA(calgrad(EA), caldel(d10, +in10) & caldel(d29, -in29) & caldel(d30, -in30) & calph(ph4, +180) & calph(ph31, +180))
exit


ph1=0
ph2=1
ph3=0 0 2 2
ph4=0 2
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=1 1 1 1 2 2 2 2 1 1 1 1 2 2 2 2
    3 3 3 3 0 0 0 0 3 3 3 3 0 0 0 0 
ph7=0 0 2 2
ph29=0
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0



;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp4: f2 channel - shaped pulse  90 degree  (Cali off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Cali off resonance)
;sp9: f2 channel - shaped pulse 180 degree  (Ca on resonance)
;     sp9 requires higher selectivity - refocussing Calpha only
;sp15: f2 channel - shaped pulse 180 degree for decoupling
;                                           (Cali off resonance)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse (Ca, selective)
;p28: f1 channel - trim pulse                          [1 msec]
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CH))                                       [1.7 msec]
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(4J'(CH))                                      [1.7 msec]
;d23: 1/(4J(CC))                                       [7.2 msec]
;d24: 1/(4J'(CC))                                      [3.6 msec]
;d29: decremented delay (F2 in 3D) = d23*2+p14-p16*2-d16*2-d10-p22-8u
;d30: decremented delay (F2 in 3D) = d23
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o2p: Calpha chemical shift (cnst22)
;inf1: 1/SW(H) = 2 * DW(H)
;inf2: 1/SW(Ca) = 2 * DW(Ca)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;in10: 1/(2 * SW(Ca)) = DW(Ca)
;nd10: 2
;in29: = in10
;in30: = in10
;ns: 16 * n
;ds: 32
;td1: number of experiments in F1
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd2: decoupling according to sequence defined by cpdprg2 : mlevsp180
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd2: f2 channel - 180 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 30%
;gpz2: 80%
;gpz3: 20.1%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
