;hcchetgplr
;avance-version (21/09/15)
;2D H-1/C-13 correlation via multiple inept transfer steps
;   via C-13/C-13 long range coupling
;on/off resonance 180degree pulses using shaped pulse
;using shaped pulses for inversion
;phase sensitive using Echo/Antiecho gradient selection
;(use parameterset HCCHETGPLR)
;
;A. Bax, D. Max & D. Zax, J. Am. Chem. Soc. 114, 6923-6925 (1992)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d4=1s/(cnst2*4)"
"d11=30m"


"d22=14.7m"


"d0=3u"

"in0=inf1/2"


"DELTA1=d4-larger(p2,p8)/2"
"DELTA2=d0+larger(p2,p22)/2-p3*2/3.1416"
"DELTA3=p16+d16+d0+larger(p2,p22)/2-p3*2/3.1416"
"DELTA4=d4-larger(p2,p8)/2-p16-d16"


"spoffs3=0"
"spoffs5=bf2*(cnst21/1000000)-o2"
"spoffs13=0"


1 ze
  d11 pl12:f2
2 d11 do:f2 
3 d1
  (p1 ph1)
  DELTA1 pl0:f2
  4u
  (center (p2 ph2) (p8:sp13 ph1):f2 )
  4u
  DELTA1 pl2:f2 UNBLKGRAD
  (p1 ph2) 

  p16:gp1
  d16

  (p3 ph2):f2
  d22
  (p14:sp5 ph1):f2
  4u
  (p14:sp3 ph3):f2
  d22
  (p14:sp5 ph1):f2
  4u
  (p3 ph4):f2

  DELTA2
  (p8:sp13 ph1):f2
  d0 
  (center (p2 ph2) (p22 ph1):f3 )
  d0
  p16:gp2*EA
  d16
  (p8:sp13 ph1):f2
  DELTA3

  (p3 ph5):f2
  4u
  (p14:sp5 ph1):f2
  d22
  (p14:sp3 ph6):f2
  4u
  (p14:sp5 ph1):f2
  d22
  (p3 ph7):f2

  (p1 ph1)
  DELTA1 pl0:f2
  4u
  (center (p2 ph2) (p8:sp13 ph6):f2 )
  DELTA4
  p16:gp3
  d16 pl12:f2 
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 
     F1EA(calgrad(EA), calph(ph5, +180) & calph(ph6, +180) & calph(ph7, +180) & calph(ph31, +180) & caldel(d0, +in0))
exit
   

ph1=0 
ph2=1
ph3=0 2 0 2 1 3 1 3
ph4=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph5=0 0 2 2
ph6=0
ph7=1 3
ph31=0 2 0 2 2 0 2 0


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse 180 degree  (Cali on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (CO off resonance)
;sp13: f2 channel - shaped pulse 180 degree  (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p14: f2 channel - 180 degree shaped pulse  (Cali or CO)
;p16: homospoil/gradient pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d22: 2 * d22 = 1 / 1J(CC)                           [14.7 msec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o2p: Caliphatic chemical shift (cnst23)
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 16 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1 : gp 2 : gp 3
;			  30 :   80 : 20.1    for C-13

;for z-only gradients:
;gpz1: 30%
;gpz2: 80%
;gpz3: 20.1% for C-13

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;$Id: $
