;hcocaconhgpwg3d
;avance-version (21/09/15)
;HCOCACONH
;3D sequence with
;   inverse correlation for triple resonance using inept transfer steps 
;
;      F1(H) -> F2(Cali) -> F2'(COs,t1) -> F2(Cali->Ca)
;            -> F2(C=O) -> F3(N,t2) -> F1(H,t3)
;
;for Glu/Asp sidechain CO
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t2
;water suppression using watergate sequence
;(use parameterset )
;
;M. Tollinger, J.D. Forman-Kay & L.E. Kay,
;   J. Am. Chem. Soc. 124, 5714-5717 (2002)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple2>


#include<Avance.incl>
#include<Grad.incl>
#include<Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=0.9m"
"d4=1.8m"
"d21=5.5m"
"d22=4.5m"
"d23=12.5m"
"d24=7.0m"
"d26=2.6m"


"d0=3u"
"d10=d23/2-p14/2"
"d29=d23/2-p14/2-p26-d21-4u"
"d30=d23/2-p14/2"

"in0=inf1/2"
"in10=inf2/4"

"in29=in10"
"in30=in10"

"td2=tdmax(td2,d30*2,in30)"


"DELTA=d0*2+larger(p14,p22)-p14"
"DELTA1=d22-d3-p2-p16-d16"
"DELTA2=d24-d22-p14"
"DELTA3=d24-p14-4u"
"DELTA4=d23-d22+4u"
"DELTA5=d26-p16-d16-p11-12u"
"DELTA6=d22-p16-d16"

"TAU1=d24/2-p14-p16-d16-4u"
"TAU2=d24/2-p34-p14/2"
"TAU3=d24-d22-p14"
"TAU4=d22-d24/2-p14/2"
"TAU5=d24/2-p34-p16-d16"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst38)/1000000)"
"spoffs7=bf2*((cnst38-cnst21)/1000000)"
"spoffs8=0"
"spoffs24=0"


"o1_F1=bf2*cnst21/1000000"


aqseq 321


1 ze
  d11 pl16:f3
2 d11 do:f3
3 d11 fq=cnst38(bf ppm):f2
  d1
  50u UNBLKGRAD
  d12 pl1:f1 pl3:f3

  (p1 ph1):f1
  d4
  (center (p2 ph1):f1 (p14:sp3 ph1):f2 )
  d4
  (p1 ph2):f1

  p16:gp1
  d16

  (p13:sp2 ph1):f2
  d3
  (p2 ph1)
  p16:gp8
  d16
  DELTA1
  (p14:sp5 ph1):f2
  4u
  (p34:sp24 ph1):f2
  DELTA6
  p16:gp8
  d16
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  p16:gp2
  d16 fq=cnst21(bf ppm):f2

  (p13:sp2 ph3):f2
  d0
  (center (p2 ph1) (p14:sp7 ph1):f2 (p22 ph1):f3 )
  d0
  4u
  (p14:sp3 ph1):f2
  DELTA
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph1):f2

  p16:gp3
  d16 fq=cnst38(bf ppm):f2

  (p13:sp2 ph1):f2
  d22
  (p14:sp5 ph1):f2
  DELTA2
  (p14:sp3 ph1):f2
  DELTA3
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph4):f2
  d24
  (p14:sp3 ph1):f2
  d24
  (p13:sp2 ph5):f2
  4u
  (p14:sp5 ph1):f2
  p16:gp9
  d16
  TAU1
  (p34:sp24 ph1):f2
  TAU2
  (p14:sp3 ph1):f2
  TAU3
  (p14:sp5 ph1):f2
  TAU4
  (p34:sp24 ph1):f2
  TAU5
  p16:gp9
  d16
  (p13:sp8 ph1):f2

  p16:gp4
  d16 fq=cnst21(bf ppm):f2

  (p13:sp2 ph1):f2
  d22
  (p14:sp7 ph1):f2
  DELTA4
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph1):f2

  p16:gp5
  d16 pl19:f1
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph6):f3
  d30
  (p14:sp7 ph1):f2
  d30
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d10
  (p14:sp7 ph1):f2
  d29
  4u do:f1
  (p26 ph7):f1
  d21
  (p21 ph1):f3

  p16:gp6
  d16
  (p11:sp1 ph8):f1
  4u
  4u pl1:f1

  (p1 ph1) 
  4u
  p16:gp7
  d16
  DELTA5
  (p11:sp1 ph8):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph8):f1
  4u
  DELTA5
  p16:gp7
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0)) 
     F2PH(calph(ph6, -90), caldel(d10, +in10) & caldel(d29, +in29) & caldel(d30, -in30))
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=0 0 2 2
ph7=3
ph8=2
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Cab off resonance at cnst38)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp24: f2 channel - shaped pulse 180 degree  (on res. at cnst38)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;p34: f2 channel - 180 degree shaped pulse (sp24)
;                      (Q3.1000: 2.0ms at 600.13 MHz)
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(8J(CH))                                       [0.9 msec]
;d4 : 1/(4J(CH))                                       [1.8 msec]
;d10: incremented delay (F2 in 3D) =  d23/2-p14/2
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH)                                        [5.5 msec
;d22: 1/(4J(COCa)                                      [4 msec]
;d23: 1/(4J(NCO))                                      [12.5 msec]
;d24: 1/(4J(CC)                                        [7.0 msec]
;d26: 1/(4J(NH))                                       [2.7 msec]
;d29: incremented delay (F2 in 3D) = d23/2-p14/2-p26-d21-4u
;d30: decremented delay (F2 in 3D) = d23/2-p14/2
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;cnst38: Cab(Asp) chem. shift (offset,in ppm)          [39.0 ppm]
;o2p: CO chemical shift (cnst21)
;inf1: 1/SW(COs) = 2 * DW(COs)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(COs)) =  DW(COs)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in29: = in10
;in30: = in10
;ns: 4 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 70%
;gpz2: 17%
;gpz3: 11%
;gpz4: 50%
;gpz5: 40%
;gpz6: 60%
;gpz7: 30%
;gpz8: 13%
;gpz9: 9%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam8: SMSQ10.100
;gpnam9: SMSQ10.100



;$Id: $
