;hjresqf
;avance-version (12/01/11)
;heteronuclear J-resolved 2D correlation
;using gated decoupling
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"p2=p1*2"
"d11=30m"


"d0=3u"

"in0=inf1"


"TAU=p2/2"


1 ze
  d11 pl12:f2
  d11 cpd2:f2
2 d11
3 d1
  p1 ph1
  d0
  (p2 ph2):f1 (TAU do):f2
  d0
  go=2 ph31 cpd2:f2
  d11 mc #0 to 2 F1QF(caldel(d0, +in0))
  d11 do:f2
exit


ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph2=0 2 1 3 1 3 2 0 1 3 2 0 2 0 3 1
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;inf1: 1/(3.2 * J(max))
;in0: 1/(3.2 * J(max))
;nd0: 1
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
