;hmbcacgplpqf
;avance-version (12/01/11)
;CIGAR HMBC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence 
;optimized for long range couplings using accordion
;with two-fold low-pass J-filter to suppress one-bond correlations
;with decoupling during acquisition
;using gradient pulses for selection
;
;C.E. Hadden, G.E. Martin & V.V. Krishnamurthy, Magn. Reson. Chem. 38,
;   143-147 (2000)
;C.E. Hadden, G.E. Martin & V.V. Krishnamurthy, J. Magn. Reson. 140,
;   274-280 (1999)
;R. Wagner & S. Berger, Magn. Reson. Chem. 36, S44-S46 (1998)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d11=30m"
"d12=20u"
"d13=4u"
"d28=3u"


"in0=inf1/2"

"FACTOR1=( (1s/(cnst14*2)) - (1s/(cnst15*2)) ) * 10000000 / td1"
"in6=FACTOR1/10000000"

"in28=in6/2 + (cnst16-1)*in0/2"
"in30=in6"

"d0=3u"
"d6=1s/(cnst14*2)"
"d30=d6-p16-d16-d13"


"DELTA1=1s/(2 * (cnst6 + 0.146 * (cnst7-cnst6)) ) -p16-d16"
"DELTA2=1s/(2 * (cnst7 - 0.146 * (cnst7-cnst6)) ) -p16-d16"
"DELTA3=p16+d16"
"DELTA4=p16*4+d16*4+d13*2+p4"
"DELTA5=DELTA1+DELTA2+p16*2+d16*2+p3*2-d12"


1 ze
2 d11 do:f2
3 50u UNBLKGRAD
  p16:gp4
  d16
  p1 ph1
  p16:gp4
  d16

  d1 BLKGRAD
  p1 ph1
  DELTA1 pl2:f2 UNBLKGRAD
  p16:gp5
  d16
  p3:f2 ph3
  DELTA2
  p16:gp6
  d16
  p3:f2 ph3

  d13
  p16:gp7
  d16
  d28
  p16:gp8
  d16
  p4:f2 ph1
  d13
  p16:gp8*-1
  d16
  d28
  DELTA3

  d6

  p3:f2 ph4
  d0
  d13
  p16:gp1
  d16
  p2 ph2
  d13
  p16:gp2
  d16
  d0
  p3:f2 ph5

  d13
  p16:gp3
  d16
  d30

  d28
  d28
  DELTA4

  DELTA5
  d12 pl12:f2 BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 F1QF(caldel(d0, +in0) & caldel(d6, -in6) & caldel(d30, -in30) & caldel(d28, +in28))
  exit


  ph1= 0
  ph2= 0 0 0 0 2 2 2 2
  ph3= 0 0 2 2
  ph4= 0 2
  ph5= 0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
  ph31=0 2 0 2 0 2 0 2 2 0 2 0 2 0 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d6 : delay for evolution of long range couplings (d6max, 1/2Jlr)
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;d28: incremented delay                              [3 usec]
;d30: decremented delay = d6-p16-d16-d13
;cnst6: = J(XH)min
;cnst7: = J(XH)max
;cnst14: = J(XH) long range (min)
;cnst15: = J(XH) long range (max)
;cnst16: = J(scale) factor
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;in6: (d6max - d6min)/td1                            [200msec-20msec]
;in28: = in6/2 + k*in0/2, k=J(scale) - 1
;in30: = in6
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:
;     gp 1 : gp 2 : gp 3 : gp 4 : gp 5 : gp 6 : gp 7 : gp 8
;       50 :   30 : 40.1 :    5 :   60 :  -40 :  -20 :   11   for C-13

;for z-only gradients:
;gpz1: 50%   for C-13
;gpz2: 30%
;gpz3: 40.1%   for C-13
;gpz4: 5%
;gpz5: 60%
;gpz6: -40%
;gpz7: -20%
;gpz8: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam8: SMSQ10.100



;$Id:$
