;hmbcgpl2ndwg
;avance-version (13/08/06)
;HMBC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;phase sensitive
;with two-fold low-pass J-filter to suppress one-bond correlations
;no decoupling during acquisition
;water suppression using watergate sequence
;
;(M. Piotto, V. Saudek & V. Sklenar, J. Biomol. NMR 2, 661 - 666 (1992))
;(V. Sklenar, M. Piotto, R. Leppik $ V. Saudek, J. Magn. Reson.,
;   Series A 102, 241 -245 (1993))
;(V. Sklenar & A. Bax, J. Magn. Reson. 74, 469 (1987))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d6=1s/(cnst13*2)"


"d0=3u"

"in0=inf1"


"DELTA1=1s/(2 * cnst6)-p16*2-d16*2"
"DELTA2=1s/(2 * cnst7)-p16-d16"
"DELTA3=d6-p16-d16-p11-p2/2+p3+d0/2-8u"
"DELTA4=p11+p2/2-p3-d0/2+4u"


1 ze 
2 d1
  50u UNBLKGRAD

  (p11:sp1 ph6):f1
  2u
  2u pl1:f1
  (p1 ph1)
  p16:gp6
  d16
  DELTA1
  p16:gp3
  d16
  (p3 ph3):f2
  DELTA2
  p16:gp4
  d16
  (p3 ph3):f2
  4u
  p16:gp5
  d16
  DELTA3

  (center (p11:sp1 ph7 2u 2u pl1 p2 ph2 4u p11:sp1 ph7):f1 (DELTA4 p3 ph4 d0 p3 ph5 DELTA4):f2 )

  4u
  p16:gp6
  d16
  4u BLKGRAD
  go=2 ph31
  d1 mc #0 to 2 
     F1PH(calph(ph4, +90), caldel(d0, +in0))
exit 
  

ph1=0
ph2=0 0 0 0 2 2 2 2
ph3=0 0 2 2
ph4=0 2
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=2
ph7=2 2 2 2 0 0 0 0
ph31=0 2 0 2 0 2 0 2 2 0 2 0 2 0 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;sp1 : f1 channel - shaped pulse  90 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d6 : delay for evolution of long range couplings (1/2Jlr)
;d16: delay for homospoil/gradient recovery
;cnst6: = 1J(XH)min
;cnst7: = 1J(XH)max
;cnst13: = J(XH) long range
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(1 * SW(X)) = 2 * DW(X)
;nd0: 1
;ns: 2 * n
;ds: 32
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ


;for z-only gradients:
;gpz3: 15%
;gpz4: -10%
;gpz5: -5%
;gpz6: 31%

;use gradient files:
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100



;Processing

;PH_mod(F1): pk (or no)

;use xfb and xf2m



;$Id:$
