;hmbcgplpndprqf
;avance-version (12/01/11)
;HMBC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;optimized on long range couplings
;with low-pass J-filter to suppress one-bond correlations
;no decoupling during acquisition
;using gradient pulses for selection
;with presaturation during relaxation delay
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>

  
"p2=p1*2"
"d2=1s/(cnst2*2)"
"d6=1s/(cnst13*2)"
"d11=30m"
"d12=20u"


"d0=3u"

"in0=inf1/2"


"DELTA=d6-d12*2-4u"


1 ze 
2 d11 
3 d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  p1 ph1
  d2
  p3:f2 ph3
  d12 pl9:f1
  DELTA cw:f1 ph29
  4u do:f1
  d12 pl1:f1

  p3:f2 ph4
  d0
  50u UNBLKGRAD
  p16:gp1
  d16
  p2 ph2
  50u
  p16:gp2
  d16
  d0
  p3:f2 ph5
  4u
  p16:gp3
  d16
  4u BLKGRAD
  go=2 ph31
  d11 mc #0 to 2 F1QF(caldel(d0, +in0))
exit 
  

ph1=0 
ph2=0 0 0 0 2 2 2 2
ph3=0 0 2 2
ph4=0 2
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph29=0
ph31=0 2 0 2 0 2 0 2 2 0 2 0 2 0 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)XH
;d6 : delay for evolution of long range couplings
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;cnst13: = J(XH) long range
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF


;use gradient ratio: 	gp 1 : gp 2 : gp 3
;			  50 :   30 : 40.1   for C-13
;			  70 :   30 : 50.1   for N-15

;for z-only gradients:
;gpz1: 50% for C-13, 70% for N-15
;gpz2: 30%
;gpz3: 40.1% for C-13, 50.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;$Id:$
