;hmbclpndqf
;avance-version (12/01/11)
;HMBC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;optimized on long range couplings
;with low-pass J-filter to suppress one-bond correlations
;no decoupling during acquisition
;
;A. Bax & M.F. Summers, J. Am. Chem. Soc. 108, 2093 - 2094 (1986)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d2=1s/(cnst2*2)"
"d6=1s/(cnst13*2)"


"d0=3u"

"in0=inf1/2"


1 ze 
2 d1
3 p1 ph1
  d2
  p3:f2 ph3
  d6
  p3:f2 ph4
  d0
  p2 ph2
  d0
  p3:f2 ph5
  go=2 ph31 
  d1 mc #0 to 2 F1QF(caldel(d0, +in0))
exit 
  

ph1=0 
ph2=0 
ph3=0 0 2 2
ph4=0 2 0 2 3 1 3 1 
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2 
ph31=0 2 0 2 1 3 1 3 2 0 2 0 3 1 3 1

  
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;d0 : incremented delay (2D)                  [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)XH
;d6 : delay for evolution of long range couplings
;cnst2: = J(XH)
;cnst13: = J(XH) long range
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 16 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF



;$Id:$
