;hmbcndprqf
;avance-version (12/01/11)
;HMBC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;optimized on long range couplings
;no decoupling during acquisition
;
;A. Bax & M.F. Summers, J. Am. Chem. Soc. 108, 2093 - 2094 (1986)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d6=1s/(cnst13*2)"
"d11=30m"
"d12=20u"


"d0=3u"

"in0=inf1/2"


1 ze 
2 d11
3 d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  p1 ph1
  d6
  p3:f2 ph3
  d0
  p2 ph2
  d0
  p3:f2 ph4
  go=2 ph31 
  d11 mc #0 to 2 F1QF(caldel(d0, +in0))
exit 
  

ph1=0 
ph2=0 
ph3=0 1 2 3 
ph4=0 0 0 0 2 2 2 2 
ph29=0
ph31=0 3 2 1 2 1 0 3

  
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;d0 : incremented delay (2D)                  [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d6 : delay for evolution of long range couplings
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;cnst13: = J(XH) long range
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 16 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF



;$Id:$
