;hmbcndpsqf
;avance-version (12/01/11)
;HMBC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;optimized on long range couplings
;no decoupling during acquisition
;using shaped pulse for off-resonance presaturation
;
;A. Bax & M.F. Summers, J. Am. Chem. Soc. 108, 2093 - 2094 (1986)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d6=1s/(cnst13*2)"
"d11=30m"
"d12=20u"


"d0=3u"

"in0=inf1/2"


"if (d1/p18 < 1) {l6=1;} else {l6=d1/p18;}"


1 ze 
2 d11 
3 d12
4 p18:sp6:f1 ph29
  4u
  lo to 4 times l6
  d12 pl1:f1
  p1 ph1
  d6
  p3:f2 ph3
  d0
  p2 ph2
  d0
  p3:f2 ph4
  go=2 ph31 
  d11 mc #0 to 2 F1QF(caldel(d0, +in0))
exit 
  

ph1=0 
ph2=0 
ph3=0 1 2 3 
ph4=0 0 0 0 2 2 2 2 
ph29=0
ph31=0 3 2 1 2 1 0 3

  
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;sp6: f1 channel - shaped pulse for presaturation
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p18: f1 channel - presaturation using shaped pulse
;d0 : incremented delay (2D)                  [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d6 : delay for evolution of long range couplings
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;cnst13: = J(XH) long range
;l6: p18 * l6 = total duration of presaturation
;                  during relaxation delay           [16]
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 16 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF

;use 100msec pulse of square shape defined by 1000 points



;$Id:$
