;hmcmcbcagpwg3d
;avance-version (21/09/15)
;(Hme)Cme([C])CA
;3D sequence with
;   inverse correlation for triple resonance using inept transfer steps 
;
;      F1(Hme) -> F2(Cme) -> F2(C->->Ca(or Cali),t1)
;                          > F2(Ca->->C) -> F2(Cme,t2) -> F1(Hme,t3)
;
;options:
;   no option       all methyl groups
;   LABEL_ALA       Cb methyl groups (Ala)
;   LABEL_VAL       Cb and Cg methyl groups (Ala, Val, Ile Cg, (also Thr Cg) )
;   LABEL_CG2       suppress Ile Cg2 methyl groups (for Ile Cd1 only)
;                      use only when no other option is selected
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t1
;water suppression using watergate sequence
;(use parameterset )
;
;V. Tugarinov & L.E. Kay, J. Am. Chem. Soc. 125, 13868-13878 (2003)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include<Avance.incl>
#include<Grad.incl>
#include<Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=1.52m"
"d4=1.8m"
"d24=7.0m"
"d25=5.0m"


"in0=inf1/2"
"in10=inf2/2"

"in30=in10"

"d0=3u"
"d10=d24-d3-p26-4u"
"d30=d24"

"td2=tdmax(td2,d30*2,in30)"


"DELTA=d0*2+larger(p14,p22)-p14"
"DELTA1=d4-p16-d16-larger(p24,p40)/2"
"DELTA2=d24-d3-p26-4u"
"DELTA3=d25/2-p24/2"
"DELTA4=d4-p19-d16-p11-larger(p2,p14)/2-12u"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst23)/1000000)"
"spoffs8=0"
"spoffs9=bf2*((cnst57-cnst23)/1000000)"
"spoffs24=bf1*(cnst49/1000000)-o1"

#   ifdef LABEL_CAB 
"TAU8=0"
#   else
"spoffs33=bf2*((cnst22-cnst23)/1000000)"


"cnst60=-spoffs33"
"cnst61=(spoffs33/1000000)*(inf1/2000000)*360.0"

"TAU8=abs(cnst60+cnst61)/100000"

"o1_F1=bf2*cnst22/1000000"
#   endif /*LABEL_CAB*/


"cnst62=-spoffs9"
"cnst63=(spoffs9/1000000)*(inf2/1000000)*360.0"

"TAU9=TAU8+abs(cnst62+cnst63)/100000"

"o1_F2=bf2*cnst57/1000000"


aqseq 321


1 ze
  d11 pl12:f2
2 d11 do:f2
3 d11
  d1 
  50u UNBLKGRAD
  d12 pl1:f1 pl0:f2 pl3:f3
  d12 fq=cnst23(bf ppm):f2

  (p1 ph1)
  p16:gp1
  d16
  DELTA1
  (center (p40:sp24 ph1):f1 (p24:sp9 ph1):f2 )
  DELTA1
  p16:gp1
  d16 pl1:f1
  (p1 ph9)

  (p11:sp1 ph3):f1
  p16:gp2
  d16 pl19:f1

  (p13:sp2 ph5):f2
  d3
  (p26 ph2):f1
  4u cpds1:f1 ph1
  DELTA2
  (p14:sp3 ph1):f2
  d24
  (p13:sp8 ph6):f2

#   ifdef LABEL_ALA  

#   else

#   ifdef LABEL_VAL  

  d25
  (p14:sp3 ph1):f2
  d25
  (p13:sp2 ph6):f2

#   else

  d25
  (p14:sp3 ph1):f2
  d25
  (p13:sp2 ph6):f2

#   ifdef LABEL_CG2  
  DELTA3
  (p24:sp9 ph1):f2
  DELTA3
  (p14:sp3 ph1):f2
  DELTA3
  (p24:sp9 ph1):f2
  DELTA3
#   else
  d25
  (p14:sp3 ph1):f2
  d25
#   endif /*LABEL_CG2*/

  (p13:sp8 ph6):f2

#   endif /*LABEL_VAL*/
#   endif /*LABEL_ALA*/

  d0
  (center (p14:sp5 ph1):f2 (p22 ph1):f3 )
  d0
  4u
  p16:gp5
  d16
#   ifdef LABEL_CAB 
  (p14:sp3 ph10):f2
#   else
  (p24:sp33 ph10):f2
#   endif /*LABEL_CAB*/
  DELTA
  p16:gp5
  d16
  (p14:sp5 ph1):f2
  4u

#   ifdef LABEL_ALA  

#   else

#   ifdef LABEL_VAL  

  (p13:sp8 ph7):f2
  d25
  (p14:sp3 ph1):f2
  d25

#   else

  (p13:sp2 ph7):f2

#   ifdef LABEL_CG2  
  DELTA3
  (p24:sp9 ph1):f2
  DELTA3
  (p14:sp3 ph1):f2
  DELTA3
  (p24:sp9 ph1):f2
  DELTA3
#   else
  d25
  (p14:sp3 ph1):f2
  d25
#   endif /*LABEL_CG2*/

  (p13:sp8 ph7):f2
  d25
  (p14:sp3 ph1):f2
  d25

#   endif /*LABEL_ALA*/
#   endif /*LABEL_VAL*/

  (p13:sp2 ph7):f2
  d30
  (p14:sp3 ph1):f2
  d10
  4u do:f1
  (p26 ph4):f1
  d3
  (p13:sp8 ph8):f2

  p16:gp3
  d16
  (p11:sp1 ph3):f1
  4u
  4u pl1:f1

  (p1 ph1) 
  4u
  p19:gp4
  d16
  DELTA4
  (p11:sp1 ph3):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  (p11:sp1 ph3):f1
  4u
  DELTA4
  p19:gp4
  d16 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 

#   ifdef LABEL_CAB 
#   ifdef LABEL_VAL  
     F1PH(calph(ph5, +90) & calph(ph6, +90), caldel(d0, +in0)) 
#   else
     F1PH(calph(ph5, -90) & calph(ph6, -90), caldel(d0, +in0)) 
#   endif /*LABEL_VAL*/

#   else

#   ifdef LABEL_VAL  
     F1PH(calph(ph5, +90) & calph(ph6, +90), caldel(d0, +in0) & calph(ph10, -cnst61))
#   else
     F1PH(calph(ph5, -90) & calph(ph6, -90), caldel(d0, +in0) & calph(ph10, -cnst61))
#   endif /*LABEL_VAL*/

#   endif /*LABEL_CAB*/
     F2PH(calph(ph8, -90), caldel(d10, +in10) & caldel(d30, -in30) & calph(ph8, -cnst63))

TAU9
exit


ph1=0
ph2=1
ph3=2
ph4=3
ph5=0 2 0 2 2 0 2 0
ph6=0 2
ph7=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph8=0
ph9=1 1 3 3
ph10=0
ph31=0 2 2 0 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp9: f2 channel - shaped pulse 180 degree  (Cme off resonance)
;     sp9 requires higher selectivity than sp3
;sp24: f1 channel - shaped pulse 180 degree  (Hme off resonance)
;                   (Rsnob.1000)
;sp33: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;      sp33 requires higher selectivity than sp3
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p19: gradient pulse 2                                 [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse (sp9)
;p26: f1 channel -  90 degree pulse at pl19
;p40: f1 channel - 180 degree shaped pulse for refocussing
;                      Rsnob.1000               (1.0ms at 600.13 MHz)
;d0 : incremented delay (F1 in 3D) = in0/2
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J'(CH))                                      [1.52 msec]
;d4 : 1/(4J(CH))                                       [1.8 msec]
;d10: incremented delay (F2 in 3D) = d24-d3-p26-4u
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d24: 1/(4J(CmeC))                                     [7 msec]
;d25: 1/(4J'(CC))                                      [5 msec]
;d30: decremented delay (F2 in 3D) = d24
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;cnst49: Hme chemical shift (offset, in ppm)           [0.5 ppm]
;cnst57: Cme chemical shift (offset, in ppm)           [15.5 ppm]
;cnst60: offset for Calpha region (Hz)
;cnst61: additional phase increment to center Calpha region
;cnst62: offset for Cme region (Hz)
;cnst63: additional phase increment to center Cme region
;o2p: Caliphatic chemical shift (cnst23)
;inf1: 1/SW(Ca) = 2 * DW(Ca)
;inf2: 1/SW(Cme) = 2 * DW(Cme)
;in0: 1/(2 * SW(Ca)) =  DW(Ca)
;nd0: 2
;in10: 1/(2 * SW(Cme)) = DW(Cme)
;nd10: 2
;in30: = in10
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 11%
;gpz2: 50%
;gpz3: 40%
;gpz4: 30%
;gpz5: 23%


;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100



                                          ;preprocessor-flags-start
;LABEL_ALA: one transfer step along sidechain: methyl groups in Cb position only
;             option -DLABEL_ALA (eda: ZGOPTNS)
;LABEL_VAL: two transfer steps along sidechain: methyl groups in Cg position only
;             option -DLABEL_VAL (eda: ZGOPTNS)
;LABEL_CAB: evolution of all aliphatic carbons in t1 (otherwise Calpha only)
;             option -DLABEL_CAB (eda: ZGOPTNS)
;LABEL_CG2: refocussing pulse for Ile Cg2 (depending on labelling scheme)
;             option -DLABEL_CG2 (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
