;hmqcetgpsi.2
;avance-version (12/01/11)
;HMQC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence using sensitivity improvement
;phase sensitive using Echo/Antiecho gradient selection
;with decoupling during acquisition
;using shaped pulses for inversion on f2 - channel
;using shorter overall timing
;
;A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance,
;   J. Magn. Reson. 93, 151-170 (1991)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"
"d11=30m"

#   ifdef LABEL_CN
"p22=p21*2"
#   else
#   endif /*LABEL_CN*/


"d0=3u"

"in0=inf1/2"


"DELTA1=p16+d16+8u"
"DELTA3=d4-p14/2+p4/2"

#   ifdef LABEL_CN
"DELTA=larger(p2,p22)+d0*2"
"DELTA2=p16+d16+d0+larger(p2,p22)/2+p4/2-p14/2-4u"
#   else
"DELTA=p2+d0*2"
"DELTA2=p16+d16+d0+p2/2+p4/2-p14/2-4u"
#   endif /*LABEL_CN*/


1 ze 
2 d1 do:f2
3 p1 ph1
  d4
  (p2 ph1) 
  DELTA2 pl0:f2 
  4u 
  (p14:sp3 ph5):f2
  4u 
  DELTA2 pl2:f2 UNBLKGRAD
  d4 
  (p3 ph3):f2
  d0

#   ifdef LABEL_CN
  (center (p2 ph2) (p22 ph1):f3 )
#   else
  (p2 ph2)
#   endif /*LABEL_CN*/

  d0
  p16:gp1*EA
  d16
  (p4 ph4):f2
  DELTA
  p16:gp1*-1*EA
  d16
  (p3 ph4):f2
  d4
  (center (p2 ph1) (p4 ph1):f2 )
  d4
  (center (p1 ph1) (p3 ph6):f2 )
  DELTA3 pl0:f2
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  DELTA3
  p1 ph7
  DELTA1
  p2 ph1
  4u
  p16:gp2
  d16 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2 
  d1 do:f2 mc #0 to 2 
     F1EA(calgrad(EA) & calph(ph4, +180), caldel(d0, +in0) & calph(ph3, +180) & calph(ph5, +180) & calph(ph31, +180))
exit 
  

ph1=0
ph2=0 0 2 2
ph3=0 0 2 2
ph4=0 2
ph5=0
ph6=1 3
ph7=1
ph31=0 2 2 0


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;p16: homospoil/gradient pulse                         [1 msec]
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(XH))
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2
;                         80 : 40.2

;for z-only gradients:
;gpz1: 80%
;gpz2: 40.2%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
