;hmqcf3gpph19
;avance-version (12/01/11)
;HMQC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;phase sensitive
;with decoupling during acquisition
;using f3 - channel
;water suppression using 3-9-19 pulse sequence with gradients
;
;M. Piotto, V. Saudek & V. Sklenar, J. Biomol. NMR 2, 661 - 666 (1992)
;V. Sklenar, M. Piotto, R. Leppik & V. Saudek, J. Magn. Reson.,
;   Series A 102, 241 -245 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d26=1s/(cnst4*4)"


"d0=3u"

"in0=inf1/2"


"DELTA=d19-p22/2"
"DELTA1=d26-p16-d16-p27*2.385-d19*5"
"DELTA2=d26-p16-d16-p27*2.154-p0*0.231-d19*5-p1/2-de-8u"


"acqt0=0"
baseopt_echo


1 ze 
  d11 pl16:f3
2 d1 do:f3
3 d12 pl1:f1
  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph2) (p22 ph6):f3 )
  d26 UNBLKGRAD
  (p1 ph1)
  (p21 ph3):f3
  d0
  (p2 ph5)
  d0
  (p21 ph4):f3
  DELTA1
  p16:gp1
  d16 pl18:f1
  p27*0.231 ph7
  d19*2
  p27*0.692 ph7
  d19*2
  p27*1.462 ph7
  DELTA
  (p22 ph1):f3
  DELTA
  p27*1.462 ph8
  d19*2
  p27*0.692 ph8
  d19*2
  p0*0.231 ph8
  4u
  p16:gp1
  d16
  4u BLKGRAD
  DELTA2 pl16:f3
  go=2 ph31 cpd3:f3
  d1 do:f3 mc #0 to 2 F1PH(calph(ph3, +90) & calph(ph6, +90), caldel(d0, +in0))
exit 
  

ph1=0
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph7=0 0 1 1
ph8=2 2 3 3
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl18: f1 channel - power level for 3-9-19-pulse (watergate)
;p0 : f1 channel -  90 degree pulse at pl18
;                      use for fine adjustment
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p27: f1 channel -  90 degree pulse at pl18
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d19: delay for binomial water suppression
;     d19 = (1/(2*d)), d = distance of next null (in Hz)
;d26 : 1/(4J)YH
;cnst4: = J(YH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1
;			  30

;for z-only gradients:
;gpz1: 30%

;use gradient files:   
;gpnam1: SMSQ10.100



;$Id:$
