;hmqcf3gpph19.2
;avance-version (12/01/11)
;HMQC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;phase sensitive
;with decoupling during acquisition
;using f3 - channel
;water suppression using 3-9-19 pulse sequence with gradients
;
;M. Piotto, V. Saudek & V. Sklenar, J. Biomol. NMR 2, 661 - 666 (1992)
;V. Sklenar, M. Piotto, R. Leppik & V. Saudek, J. Magn. Reson.,
;   Series A 102, 241 -245 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"d11=30m"
"d12=20u"
"d21=1s/(cnst4*2)"


"in0=inf1"

"d0=in0/2-p21*4/3.1415"


"DELTA1=d21-p16-d16-p27*2.385-d19*5-p1*2/3.1416"
"DELTA2=d21-p16-d16-p27*2.154-p0*0.231-d19*5-de-4u"


"acqt0=0"
baseopt_echo


1 ze 
  d11 pl16:f3
2 d1 do:f3
3 d12 pl1:f1 pl3:f3
  50u UNBLKGRAD

  (p1 ph1)
  p16:gp1
  d16 pl18:f1
  DELTA1

#   ifdef LABEL_CN
  (center (p27*0.231 ph7 d19*2 p27*0.692 ph7 d19*2 p27*1.462 ph7 d19*2 p27*1.462 ph8 d19*2 p27*0.692 ph8 d19*2 p0*0.231 ph8):f1 (p14:sp3 ph1):f2 (p21 ph3 d0 p21 ph4):f3 )
#   else
  (center (p27*0.231 ph7 d19*2 p27*0.692 ph7 d19*2 p27*1.462 ph7 d19*2 p27*1.462 ph8 d19*2 p27*0.692 ph8 d19*2 p0*0.231 ph8):f1 (p21 ph3 d0 p21 ph4):f3 )
#   endif /*LABEL_CN*/

  DELTA2
  p16:gp1
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d1 do:f3 mc #0 to 2 F1PH(calph(ph3, +90) & calph(ph6, +90), caldel(d0, +in0))
exit 
  

ph1=0
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph7=0 0 1 1
ph8=2 2 3 3
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl18: f1 channel - power level for 3-9-19-pulse (watergate)
;sp3: f2 channel - shaped pulse 180 degree (adiabatic)
;p0 : f1 channel -  90 degree pulse at pl18
;                      use for fine adjustment
;p1 : f1 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion (adiabatic
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p27: f1 channel -  90 degree pulse at pl18
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d19: delay for binomial water suppression
;     d19 = (1/(2*d)), d = distance of next null (in Hz)
;d21 : 1/(2J)NH
;cnst4: = J(NH)
;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/(1 * SW(N)) = 2 * DW(N)
;nd0: 1
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 30%

;use gradient files:   
;gpnam1: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
