;hmqcf3gpphwg
;avance-version (12/01/11)
;HMQC
;2D correlation via zero and double quantum coherence
;phase sensitive
;with decoupling during acquisition
;using f3 - channel
;water suppression using watergate sequence
;
;A. Bax, R.H. Griffey & B.L. Hawkins, J. Magn. Reson. 55, 301 (1983)
;M. Piotto, V. Saudek & V. Sklenar, J. Biomol. NMR 2, 661 - 666 (1992)
;V. Sklenar, M. Piotto, R. Leppik $ V. Saudek, J. Magn. Reson.,
;   Series A 102, 241 -245 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d11=30m"
"d21=1s/(cnst4*2)"


"in0=inf1"

"d0=in0/2-p21*4/3.1415"


"DELTA1=d21-p16-d16"

"TAU1=de+4u"
"TAU2=p1*2/3.1416"


"acqt0=0"
baseopt_echo


1 ze
  d11 pl16:f3
2 d11 do:f3
3 d1
  50u UNBLKGRAD

  (p11:sp1 ph6)
  2u
  2u pl1:f1
  (p1 ph1)
  TAU1
  p16:gp1
  d16 pl3:f3

#   ifdef LABEL_CN
  (center (p11:sp1 ph7 2u 2u pl1 p2 ph5 4u p11:sp1 ph7):f1 (p8:sp13 ph1):f2 (DELTA1 p21 ph3 d0 p21 ph4 DELTA1):f3 )
#   else
  (center (p11:sp1 ph7 2u 2u pl1 p2 ph5 4u p11:sp1 ph7):f1 (DELTA1 p21 ph3 d0 p21 ph4 DELTA1):f3 )
#   endif /*LABEL_CN*/

  p16:gp1
  d16 pl16:f3
  TAU2
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=2
ph7=2 2 0 0
ph31=0 2 0 2 2 0 2 0
  

;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1 : f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d13: short delay                                      [4 usec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH))
;cnst4: = J(NH)
;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/(1 * SW(N)) = 2 * DW(N)
;nd0: 1
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 31%

;use gradient files:   
;gpnam1: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
