;hmqcgpphwg
;avance-version (20/06/19)
;HMQC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;phase sensitive
;with decoupling during acquisition
;
;(S. Asami, W. Kallies, J.C. Guenther, M. Stavropoulou, S.J. Glaser & M. Sattler,
;   Angew. Chem.  130, x - x (2018))
;(A. Bax, R.H. Griffey & B.L. Hawkins, J. Magn. Reson. 55, 301 (1983))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"
"p22=p21*2"
"d2=1s/(cnst2*2)"
"d11=30m"


"in0=inf1"

"d0=in0/2-p3*4/PI"


"DELTA1=d2-p16-d16-p11-p2/2-p1*2/PI-4u"
"DELTA2=d2-p16-d16-p11-p2/2-de-8u"
"DELTA3=p11+p2/2+4u"


"acqt0=0"
baseopt_echo


1 ze 
2 d1 do:f2
  50u UNBLKGRAD

  (p11:sp1 ph5):f1
  (p1 pl1 ph1):f1
  p16:gp1
  d16 pl2:f2
  DELTA1

  (
  center 
  (p11:sp1 ph6 2u 2u pl1 p2 ph2 4u p11:sp1 ph6):f1
  (DELTA3 p3 ph3 d0 p3 ph4 DELTA3):f2
  (p22 ph1):f3
  )

  DELTA2
  p16:gp1
  d16 pl12:f2
  4u BLKGRAD

  go=2 ph31 cpd2:f2 
  d1 do:f2 mc #0 to 2
     F1PH(calph(ph3, +90), caldel(d0, +in0))
exit 
  

ph1=0 
ph2=0 0 1 1 0 0 1 1 2 2 3 3 2 2 3 3
ph3=0 2
ph4=0 0 0 0 2 2 2 2 
ph5=2
ph6=2 2 3 3 2 2 3 3 0 0 1 1 0 0 1 1
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D) = in0/2-p3*4/PI
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)XH
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/SW(X) = 2 * DW(X)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 31% 

;use gradient files:
;gpnam1: SMSQ10.100



;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
