;hmqcgpqf
;avance-version (12/01/11)
;HMQC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;with decoupling during acquisition
;using gradient pulses for selection
;use pulseprogram 'hmqcgpnd1d' for setup
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>
  

"p2=p1*2"
"d2=1s/(cnst2*2)"
"d12=20u"
"d13=4u"


"d0=3u"

"in0=inf1/2"


"DELTA1=d2-p16-d16-d13-d12"


1 ze 
2 d1 do:f2
3 p1 ph1
  d2 pl2:f2 UNBLKGRAD
  p3:f2 ph3
  d0
  p16:gp1
  d16
  p2 ph2
  d13
  p16:gp2
  d16
  d0
  p3:f2 ph4
  d13
  p16:gp3
  d16
  DELTA1
  d12 pl12:f2 BLKGRAD
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 F1QF(caldel(d0, +in0))
exit 
  

ph1=0 
ph2=0 
ph3=0 2
ph4=0 0 2 2
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                  [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)XH
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1 : gp 2 : gp 3
;			  50 :   30 : 40.1   for C-13
;			  70 :   30 : 50.1   for N-15

;for z-only gradients:
;gpz1: 50% for C-13, 70% for N-15
;gpz2: 30%
;gpz3: 40.1% for C-13, 50.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;$Id:$
