;hmqcmlphpr
;avance-version (12/01/11)
;HMQC-TOCSY
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence using MLEV17 for homonuclear Hartman-Hahn
;   mixing
;phase sensitive
;with decoupling during acquisition
;
;L. Lerner & A.Bax, J. Magn. Reson. 69, 375-380 (1986)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"p2=p1*2"
"p5=p6*.667"
"p7=p6*2"
"d2=1s/(cnst2*2)"
"d11=30m"
"d12=20u"
"d13=4u"


"d0=3u"

"in0=inf1/2"


"SCALEF=p7*2/p5"
"FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF"
"l1=FACTOR1*SCALEF"


1 ze 
2 d11 do:f2
3 d12 pl9:f1
  d1 cw:f1 ph29
  d13 do:f1
  d12 pl1:f1
  p1 ph1
  d2 pl2:f2
  p3:f2 ph3
  d0
  p2 ph2
  d0
  p3:f2 ph4
  d2 pl10:f1
  (p17 ph26)
						;begin MLEV17
4 (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p5 ph23)
  lo to 4 times l1
						;end MLEV17
  (p17 ph26)
  d12 pl12:f2
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 F1PH(calph(ph3, +90) & calph(ph29, +90), caldel(d0, +in0))
exit 
  

ph1=0 
ph2=0 
ph3=0 2 
ph4=0 0 2 2 
ph22=0 
ph23=1 
ph24=2 
ph25=3 
ph26=1 
ph29=0
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p5 : f1 channel -  60 degree low power pulse
;p6 : f1 channel -  90 degree low power pulse
;p7 : f1 channel - 180 degree low power pulse
;p17: f1 channel - trim pulse                             [2.5 msec]
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)
;d9 : TOCSY mixing time
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;cnst2: = J(XH)
;l1: loop for MLEV cycle: (((p6*64) + p5 ) * l1) + (p17*2) = mixing time
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
