;hmscetgpnd
;avance-version (12/01/11)
;HMSC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;phase sensitive using Echo/Antiecho gradient selection
;with two-fold low-pass J-filter to suppress one-bond correlations
;no decoupling during acquisition
;
;R. Burger, C. Schorn & P.Bigler, J. Magn. Reson. 148, 88-94 (2001)
;(D.O. Cicero, G. Barbato & R. Bazzo, J. Magn. Reson. 148,
;   209-213 (2001))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"cnst30=(1-sfo2/sfo1)/(1+sfo2/sfo1)"

define list<gradient> EA1 = { 1.000 -cnst30}
define list<gradient> EA2 = { -cnst30 1.000}


"p2=p1*2"
"d2=1s/(cnst2*2)"
"d6=1s/(cnst13*2)"


"d0=3u"

"in0=inf1/2"


"DELTA=p2+d0*2"
"DELTA1=d2-p14/2"

"TAU=p14"


"l0=1"


1 ze 
2 d1
3 p1 ph1
  d6*0.5
  (p1 ph1)
  DELTA1
  (center (p2 ph3) (p14:sp3 ph1):f2 )
  DELTA1
  (p1 ph1)
  d6*0.5

  if "l0 %2 == 1"
     {
     (p14:sp3 ph1):f2
     }
  else
     {
     TAU
     }

  4u
  DELTA1 pl2:f2 UNBLKGRAD
  (p3 ph4):f2
  d0
  p2 ph2
  d0
  p16:gp1*EA1
  d16
  (p24:sp7 ph5):f2
  DELTA
  p16:gp1*EA2
  d16 pl2:f2
  (p3 ph5):f2
  4u BLKGRAD
  go=2 ph31
  d1 mc #0 to 2 
     F1I(iu0, 2)
     F1EA(calgrad(EA1) & calgrad(EA2), caldel(d0, +in0) & calph(ph4, +180) & calph(ph31, +180))
exit 
  

ph1=0
ph2=0 0 0 0 2 2 2 2
ph3=1 1 3 3
ph4=0 2
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph31=0 2 0 2 0 2 0 2 2 0 2 0 2 0 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;sp3: f2 channel - shaped pulse 180 degree
;spnam3: Crp60,0.5,20.1
;sp7: f2 channel - shaped pulse (180degree refocussing)
;spnam7: Crp60comp.4
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500usec for Crp60,0.5,20.1
;p16: homospoil/gradient pulse                         [1 msec]
;p24: f2 channel - 180 degree shaped pulse for refocussing
;     = 2msec for Crp60comp.4
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d6 : delay for evolution of long range couplings (1/2Jlr)
;d16: delay for homospoil/gradient recovery
;cnst13: = J(XH) long range
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: echo-antiecho


;use gradient ratio:    gp 1
;                         80 

;for z-only gradients:
;gpz1: 80%

;use gradient files:
;gpnam1: SMSQ10.100



;Processing

;use AU-program split [ipap 2] to split and recombine data

;PH_mod(F1): pk (or no)

;use xfb and xf2m



;$Id:$
