;hncacogpwg4d_mq
;avance-version (21/09/15)
;HNCACO
;4D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(H) -> F3(N) -> F2(Ca,t1), HMQC(C=O,t2) 
;                     -> F3(N,t3) -> F1(H,t4)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;phase sensitive (t3)
;using constant time in t1
;using constant time in t2
;using semi-constant time in t3
;water suppression using watergate sequence
;using additional phase incrementation to center CO region
;(use parameterset )
;
;(R.T. Clubb, V. Thanabal & G. Wagner, J. Magn. Reson. 97, 213-217 (1992))
;(L.E. Kay, G.Y. Xu & T. Yamazaki, J. Magn. Reson. A109, 129-133 (1994))
;
;$CLASS=HighRes
;$DIM=4D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"

"d21=5.5m"
"d22=4.4m"
"d23=12.4m"
"d26=2.3m"
"d28=7.2m"


"d31=3u"
"d32=3u"
"d33=3u"
"d52=3u"
"d53=3u"
"d41=d22-d52-p14/2-p13"
"d42=d28-d22-p14/2"
"d43=d23-d21-p26-4u"
"d62=d28-d31-p13-d32*2-p22-p14"

"in31=inf1/4"
"in32=inf2/2"
"in33=inf3/2"

"FACTOR3=d43*10000000*2/td3"
"INCR3=FACTOR3/10000000"

"if ( INCR3 > in33 ) { in43 = in33; } else { in43 = INCR3; }"
"if ( INCR3 > in33 ) { in53 = 0; } else { in53=in33-INCR3; }"

"in41=in31"
"in42=in32/2"
"in52=in32/2"
"in62=in32"

"td1=tdmax(td1,d41*2,in41)"
"td2=tdmax(td2,d42*2,in42)"


"DELTA1=d23-d21-p26"
"DELTA3=d32*2+p22"
"DELTA4=d26-p16-d16-p11-p1*2/3.1416-12u"
"DELTA5=d26-p16-d16-p11-de-12u"
"DELTA6=d23-d33-p14*2-d53"


"spoffs2=0"
"spoffs3=0"
"spoffs4=bf2*(cnst21/1000000)-o2"
"spoffs5=bf2*(cnst21/1000000)-o2"
"spoffs6=bf2*(cnst21/1000000)-o2"
"spoffs8=0"

"spoal4=1"
"spoal6=0"


"cnst62=-spoffs4"
"cnst63=(spoffs4/1000000)*(inf2/1000000)*360.0"


"TAU9=abs(cnst62+cnst63)/100000"


"o1_F2=bf2*cnst21/1000000"


"acqt0=0"
baseopt_echo


1 d11 ze
  d11 pl16:f3 
2 d11 do:f3
3 d1 pl1:f1

  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph1) (p22 ph1):f3 )
  d26 UNBLKGRAD
  (p1 ph2):f1 

  4u
  (p11:sp1 ph1):f1
  4u
  p16:gp1
  d16

  (p21 ph1):f3
  d21 pl19:f1
  (p26 ph2):f1
  DELTA1 cpds1:f1 ph1
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p21 ph1):f3

  4u do:f1
  (p26 ph7):f1
  4u
  p16:gp5
  d16
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph4):f2
  (p13:sp4 ph1):f2
  d41
  d52
  (p14:sp5 ph1):f2
  d42
  (p14:sp3 ph1):f2
  d62
  d31
  (p13:sp4 ph5):f2
  DELTA3
  (p14:sp5 ph5):f2
  d32
  (p22 ph1):f3
  d32
  (p13:sp6 ph1):f2
  (p14:sp5 ph1):f2
  d31
  d62
  (p14:sp3 ph1):f2
  d42
  (p14:sp5 ph1):f2
  d52
  d41
  (p13:sp6 ph1):f2
  (p13:sp8 ph8):f2

  4u do:f1
  (p26 ph7):f1
  4u
  p16:gp2
  d16
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph6):f3
  d33
  (p14:sp5 ph1):f2
  DELTA6
  (p14:sp3 ph1):f2
  d53
  (p22 ph1):f3
  d43
  4u do:f1
  (p26 ph7):f1
  d21
  (p21 ph1):f3

  p16:gp3
  d16
  (p11:sp1 ph7):f1
  4u
  4u pl1:f1

  (p1 ph1) 
  4u
  p16:gp4
  d16
  DELTA4
  (p11:sp1 ph7):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph7):f1
  4u
  DELTA5
  p16:gp4
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3 
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph4, -90), caldel(d31, +in31) & caldel(d41, -in41))
     F2PH(calph(ph5, +90), caldel(d32, +in32) & caldel(d42, -in42) & caldel(d52, +in52) & caldel(d62, -in62) & calph(ph5, cnst63))
     F3PH(calph(ph6, +90), caldel(d33, +in33) & caldel(d43, -in43) & caldel(d53, +in53))

TAU9
exit


ph1=0
ph2=1 
ph4=0 2
ph5=0 0 0 0 2 2 2 2
ph6=0 0 2 2
ph7=2
ph8=0
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (Ca on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp4: f2 channel - shaped pulse  90 degree  (C=O off resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp6: f2 channel - shaped pulse  90 degree  (C=O off resonance)
;                  for time reversed pulse
;sp8: f2 channel - shaped pulse  90 degree  (Ca on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH)                                        [5.5 msec]
;d22: 1/(4J(CaCO)                                      [4.4 msec]
;d23: 1/(4J(NCa)                                       [12.4 msec]
;d26: 1/(4J'(NH)                                       [2.3 msec]
;d28: 1/(4J(CaCb)                                      [7.2 msec]
;d31: incremented delay (F1 in 4D)                     [3 usec]
;d32: incremented delay (F2 in 4D)                     [3 usec]
;d33: incremented delay (F3 in 4D)                     [3 usec]
;d41: decremented delay (F2 in 4D) = d22-d52-p14/2-p13
;d42: decremented delay (F2 in 4D) = d28-d22-p14/2
;d43: decremented delay (F3 in 4D) = d23-d21-p26-4u
;d52: incremented delay (F2 in 4D)                     [3 usec]
;d53: incremented delay (F3 in 4D)                     [3 usec]
;d62: decremented delay (F2 in 4D) = d28-d31-p13-d32*2-p22-p14
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst62: offset for CO region (Hz)
;cnst63: additional phase increment to center CO region
;o2p: Calpha chemical shift (cnst22)
;inf1: 1/SW(Ca) = 2 * DW(Ca)
;inf2: 1/SW(CO) = 2 * DW(CO)
;inf3: 1/SW(N) = 2 * DW(N)
;in31: 1/(4 * SW(Ca)) = (1/2) DW(Ca)
;in32: 1/(2 * SW(CO)) = DW(CO)
;in33: 1/(2 * SW(N)) = DW(N)
;in41: = in31
;in42: = in32/2
;in43: = k3 * in33
;in52: = in32/2
;in53: = (1 - k3) * in33
;in62: = in32
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;td3: number of experiments in F3
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;FnMODE: States-TPPI (or TPPI) in F3
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 40%
;gpz3: -23%
;gpz4: 70%
;gpz5: -45%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100



;$Id: $
