;hncadqzqgp3d
;avance-version (21/09/15)
;DQ/ZQ+SQ-HNCA
;3D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(H) -> F3(N) -> F2(Ca), DQ/ZQ(H,t1) -> F3(N,t2) -> F1(H,t3)
;
;for determination of 3J H(N)Ha amd H(N)Cb (Phi) using DQ/ZQ
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho gradient selection (t2)
;using constant time in t2
;recording DQ+ZQ and DQ-ZQ in interleaved mode
;(use parameterset HNCADQZQGP3D)
;
;A. Rexroth, P. Schmidt, S. Salma, T. Geppert, H. Schwalbe & 
;   C. Griesinger, J. Am. Chem. Soc. 117, 10389-10390 (1995)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d13=4u"

"d23=13.5m"
"d26=2.6m"
"d28=3u"


"d0=3u"
"d10=3u"
"d30=d23-p16-d16"

"in0=inf1/2"
"in10=inf2/2"

"in28=cnst31*in0"
"in30=in10"

"td2=tdmax(td2,d30*2,in30)"


"DELTA=d0*2+larger(p14,p22)-p14"
"DELTA1=p16+d16+d13+4u" 
"DELTA2=d23-d10-larger(p2,p14)"
"DELTA3=p14*2.5+d0*3+p13-d28-p22/2+8u"
"DELTA4=p14/2+d0-d28-p22/2"


"l0=1"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*(cnst21/1000000)-o2"
"spoffs8=0"


aqseq 321


1 d11 ze
  d11 pl16:f3 
2 d11 do:f3
3 d1 pl1:f1
  p1 ph1
  d26 pl3:f3
  (center (p2 ph1) (p22 ph1):f3 )
  d26 UNBLKGRAD
  (p1 ph2):f1 

  p16:gp1
  d16

  (p21 ph3):f3
  d23
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p21 ph2):f3

  if "l0 %2 == 1"
     {
     (ralign (p1 ph4):f1 (p13:sp2 ph5):f2 )
     }
  else
     {
     (ralign (p1 ph6):f1 (p13:sp2 ph7):f2 )
     }

  d0
  (center (p14:sp5 ph1):f2 (p22 ph10):f3 )
  d0
  4u
  (p14:sp3 ph1):f2
  DELTA
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  (p2 ph1):f1
  DELTA3
  d28
  (p22 ph1):f3
  DELTA4
  d28
  (p1 ph1):f1

  (p21 ph2):f3
  d10
  (center (p2 ph1):f1 (p14:sp5 ph1):f2 )
  DELTA2
  (center (p14:sp3 ph1):f2 (p22 ph10):f3 )
  d30
  p16:gp2*EA
  d16

  (center (p1 ph1) (p21 ph8):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (center (p1 ph2) (p21 ph9):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph1)
  DELTA1
  (p2 ph1)
  d13
  p16:gp3
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3 
  d11 do:f3 mc #0 to 2 
     F1I(iu0, 2)
     F1PH(calph(ph5, +90) & calph(ph7, +90), caldel(d0, +in0) & caldel(d28, +in28)) 
     F2EA(calgrad(EA) & calph(ph9, +180), caldel(d10, +in10) & caldel(d30, -in30))
exit


ph1=0
ph2=1 
ph3=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph4=0 2
ph5=0 2
ph6=1 3
ph7=1 3
ph8=0 0 2 2
ph9=3 3 1 1
ph10=0 0 0 0 2 2 2 2
ph31=0 0 2 2 0 0 2 2 2 2 0 0 2 2 0 0


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp2: f2 channel - shaped pulse  90 degree  (Ca on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (Ca on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (Ca on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d13: short delay                                      [4 usec]
;d16: delay for homospoil/gradient recovery
;d23: 1/(4J(NCa)                                       [13.5 msec]
;d26: 1/(4J'(NH)                                       [2.6 msec]
;d28: incremented delay (F1 in 3D)                     [3 usec]
;d30: decremented delay (F2 in 3D) = d23-p16-d16
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o2p: Calpha chemical shift (cnst22)
;cnst31: scaling factor for F1                         [1]
;l0: flag to switch between DQ+ZQ and DQ-ZQ
;inf1: 1/SW(Ca) = 2 * DW(Ca)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Ca)) =  DW(Ca)
;nd0: 2
;in10: 1/(2 * SW(N)) = DW(N)
;nd10: 2
;in28: = cnst31 * in0
;in30: = in10
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2 : gp 3
;                         30 :   80 :  8.1

;for z-only gradients:
;gpz1: 30%
;gpz2: 80%
;gpz3: 8.1%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


;use AU-program split [ipap 2] to process data

;F2 reverse: true



;$Id: $
