;hncahagp3d
;avance-version (21/09/15)
;CO-coupled (H)NCaHa
;3D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(H) -> F3(N,t1) -> F2(Ca,t2) -> F1(Ha,t3)
;
;for determination of 3J HaC' (Phi) using E.COSY
;   splitting in F1:  NC'
;   splitting in F3:  HaC'
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho gradient selection (t2)
;using semi-constant time in t1
;using constant time in t2
;(use parameterset HNCAHAGP3D)
;
;F. Loehr & H. Rueterjans, J. Biomol. NMR 5, 25 - 36 (1995)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d13=4u"

"d3=2.1m"
"d4=1.7m"
"d21=5.5m"
"d23=15.5m"
"d26=2.3m"
"d27=13.3m"


"p19=5m"


"d0=3u"
"d10=3u"
"d20=d23+d0+(p14-p22)/2"
"d28=(p14-p22)/2"
"d30=d27-d3"

"in0=inf1/2"
"in10=inf2/2"

"FACTOR1=d20*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in0 ) { in20 = in0; } else { in20 = INCR1; }"
"if ( INCR1 > in0 ) { in28 = 0; } else { in28=in0-INCR1; }"

"in30=in10"

"td2=tdmax(td2,d30*2,in30)"


"DELTA1=d27-p14-d10" 
"DELTA2=d3-p16-d16-p14-p26-d13-8u" 
"DELTA3=d24-larger(p2,p14)/2-larger(p1,p13)/2"
"DELTA4=d4-larger(p2,p14)/2-larger(p1,p13)/2"
"DELTA5=p16+d16+8u" 

"TAU=p13/2"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*(cnst21/1000000)-o2"
"spoffs7=bf2*(cnst23/1000000)-o2"
"spoffs8=0"
"spoffs15=0"


aqseq 321


1 d11 ze
  d11 pl28:f2 pl16:f3 
2 d11 do:f2 do:f3
3 d1 pl1:f1 pl3:f3

  p1 ph1
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26 UNBLKGRAD
  (p1 ph2):f1 

  4u pl0:f1
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16

  (p21 ph3):f3
  (d21 pl19 p26 ph2 20u cpds1 ph1):f1 (d0 d23 p14:sp3 ph1):f2 (d0 d23 d28 p22 ph8 d20):f3
  (p21 ph1):f3

  4u do:f1
  (p26 ph7):f1
  4u

  4u pl10:f1
  (p17 ph1):f1
  (p17*2 ph2):f1

  p19:gp2
  d16 pl19:f1

  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph4):f2
  d10
  (p14:sp5 ph1):f2
  DELTA1
  (center (p14:sp7 ph1):f2 (p22 ph1):f3 )
  d30
  d13 do:f1
  (p26 ph7):f1
  4u
  p16:gp3*EA
  d16
  DELTA2 pl1:f1
  (p14:sp5 ph1):f2
  4u
  (center (p1 ph1) (p13:sp8 ph5):f2 )
  DELTA3
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  DELTA3
  (center (p1 ph2) (p13:sp2 ph6):f2 )
  DELTA4
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  DELTA4
  TAU
  (p1 ph1)
  DELTA5
  (p2 ph1)
  4u
  p16:gp4
  d16 pl28:f2 pl16:f3 
  4u BLKGRAD
  go=2 ph31 cpd2:f2 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20) & caldel(d28, +in28))
     F2EA(calgrad(EA) & calph(ph6, +180), caldel(d10, +in10) & caldel(d30, -in30) & calph(ph4, +180) & calph(ph31, +180))
exit


ph1=0
ph2=1 
ph3=0 0 2 2
ph4=0 2
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=3 3 3 3 3 3 3 3 1 1 1 1 1 1 1 1
ph7=3
ph8=0 0 0 0 2 2 2 2
ph31=0 2 2 0 0 2 2 0 2 0 0 2 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;pl28: f2 channel - power level for selective Ca or CO decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (Ca on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (Ca on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Cali off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (Ca on resonance)
;                  for time reversed pulse
;sp15: f2 channel - shaped pulse 180 degree for decoupling
;                                           (Ca on resonance)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [2 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p17: f1 channel - trim pulse                          [2.5 msec]
;p19: gradient pulse 2                                 [5 ms]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;p31: f2 channel - 180 degree pulse for decoupling sequence
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o2p: Calpha chemical shift (cnst22)
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(3.2J(CH)                                      [2.1 msec]
;d4 : 1/(4J(CH)                                        [1.7 msec]
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d13: short delay                                      [4 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d23+d0+(p14-p22)/2
;d21: 1/(2J(NH)                                        [5.5 msec]
;d23: 1/(4J(NCa)                                       [15.5 msec]
;d24: 1/(8J)CH for all multiplicities
;     1/(4J)CH for CH
;d26: 1/(4J'(NH)                                       [2.3 msec]
;d27: constant time delay T(C)                         [13.3 msec]
;d28: incremented delay (F1 in 3D) = (p14-p22)/2
;d30: decremented delay (F2 in 3D) = d27-d3
;inf1: 1/SW(N) = 2 * DW(N)
;inf2: 1/SW(Ca) = 2 * DW(Ca)
;in0: 1/(2 * SW(N)) = DW(N)
;nd0: 2
;in10: 1/(2 * SW(Ca)) =  DW(Ca)
;nd10: 2
;in20: = d20 * 2 / td1
;in28: = in0 - in20
;in30: = in10
;ns: 8 * n
;ds: >= 32
;td1: number of experiments in F1       td1 min = 2 * d20 / in0
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd2: decoupling according to sequence defined by cpdprg2 : mlevsp180.p31
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2 : gp 3 : gp 4
;                         30 :   60 :   80 : 20.1

;for z-only gradients:
;gpz1: 30%
;gpz2: 60%
;gpz3: 80%
;gpz4: 20.1%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100


;F2 reverse: true



;$Id: $
