;hncannhgp4d
;avance-version (21/09/15)
;HN(CA)NNH
;4D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(H,t1) -> F3(N,t2) -> F2(Ca) -> F3(N,t3) -> F1(H,t4)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;on resonance Ca pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;phase sensitive using Echo/Antiecho-TPPI gradient selection (t3)
;using semi-constant time in t1, t2 and t3
;(use parameterset )
;
;R. Weisemann, H. Rueterjans & W. Bermel, J. Biomol. NMR 3, 
;   113-120 (1993)
;
;$CLASS=HighRes
;$DIM=4D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"

"d21=5.5m"
"d23=12.4m"
"d26=2.3m"
"d27=12.5m"


"d51=3u"
"d52=3u"
"d53=3u"
"d31=d26"
"d32=d23/2-p14/2"
"d33=d23/2-p14/2"
"d41=d26+p22+p2"
"d42=d23/2+p14/2+d52"
"d43=d23/2+p14/2+d53"
"d62=d23/2-p14/2-p26-d21-4u"
"d63=d23/2-p14/2-p26-d21-4u"

"in31=inf1/2"
"in32=inf2/4"
"in33=inf3/4"

"FACTOR1=d41*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in31 ) { in41 = in31; } else { in41 = INCR1; }"
"if ( INCR1 > in31 ) { in51 = 0; } else { in51 = in31-INCR1; }"

"FACTOR2=d42*10000000*2/td2"
"INCR2=FACTOR2/10000000"

"if ( INCR2 > in32 ) { in42 = in32; } else { in42 = INCR2; }"
"if ( INCR2 > in32 ) { in52 = 0; } else { in52 = in32-INCR2; }"

"in62=in32"

"FACTOR3=d43*10000000*2/td3"
"INCR3=FACTOR3/10000000"

"if ( INCR3 > in33 ) { in43 = in33; } else { in43 = INCR3; }"
"if ( INCR3 > in33 ) { in53 = 0; } else { in53 = in33-INCR3; }"

"in63=in33"


"DELTA1=d21-p16-d16-4u"
"DELTA2=p16+d16+8u"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*(cnst21/1000000)-o2"
"spoffs8=0"
"spoffs9=0"


"cnst62=-(bf1*cnst19-(o1*1000000))"
"cnst63=(bf1*cnst19-(o1*1000000))*(inf1/1000000)*360.0"


"o1_F1=bf1*cnst19/1000000"


"TAU9=abs(cnst62+cnst63)/100000"


1 d11 ze
  d11 pl16:f3
2 d11 do:f3
3 d1 pl1:f1 pl3:f3
  50u UNBLKGRAD

  p16:gp6
  d16
  (p11:sp1 ph11):f1
  2u
  2u pl1:f1

  (p1 ph10)
  d31
  (p22 ph1):f3
  d51
  (p2 ph1)
  d41
  (p1 ph2)

  4u
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16

  (p21 ph3):f3
  d21 pl19:f1
  (p26 ph7):f1
  4u cpds1:f1 ph1
  d62
  (p14:sp5 ph1):f2
  d32
  (p14:sp3 ph1):f2
  d52
  (p14:sp5 ph1):f2
  d52
  (p22 ph1):f3
  d42
  (p14:sp5 ph1):f2
  d42
  (p21 ph1):f3

  4u do:f1
  (p26 ph2):f1
  4u
  p16:gp4
  d16
  (p26 ph7):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph4):f2 
  d27
  (p14:sp5 ph1):f2
  d27
  (center (p24:sp9 ph1):f2 (p22 ph8):f3 )
  d27
  (p14:sp5 ph1):f2
  d27
  (p13:sp8 ph1):f2 

  4u do:f1
  (p26 ph2):f1
  4u
  p16:gp5
  d16
  (p26 ph7):f1
  20u cpds1:f1 ph1

  (p21 ph9):f3
  d43
  (p14:sp5 ph1):f2
  d43
  (p22 ph8):f3
  d53
  (p14:sp5 ph1):f2
  d53
  (p14:sp3 ph1):f2
  d33
  (p14:sp5 ph1):f2
  d63
  4u do:f1
  (p26 ph2):f1
  4u
  p16:gp2*EA
  d16 
  DELTA1 pl1:f1

  (center (p1 ph1) (p21 ph5):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (center (p1 ph2) (p21 ph6):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph1)
  DELTA2
  (p2 ph1)
  4u
  p16:gp3
  d16 pl16:f3
  4u BLKGRAD

  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2
     F1PH(calph(ph10, +90) & calph(ph11, +90), caldel(d31, +in31) & caldel(d41, -in41) & caldel(d51, +in51) & calph(ph10, cnst63) & calph(ph11, cnst63))
     F2PH(calph(ph3, +90), caldel(d32, +in32) & caldel(d42, -in42) & caldel(d52, +in52) & caldel(d62, +in62))
     F3EA(calgrad(EA) & calph(ph6, +180), caldel(d33, +in33) & caldel(d43, -in43) & caldel(d53, +in53) & caldel(d63, +in63) & calph(ph9, +180) & calph(ph31, +180))

TAU9
exit


ph1=0
ph2=1
ph3=0 0 0 0 2 2 2 2
ph4=0 2
ph5=0 0 2 2
ph6=3 3 1 1
ph7=3
ph8=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph9=0
ph10=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph11=2 2 2 2 2 2 2 2 0 0 0 0 0 0 0 0
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (Ca on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (Ca on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (Ca on resonance)
;                  for time reversed pulse
;sp9: f2 channel - shaped pulse 180 degree  (Ca on resonance)
;     sp9 requires higher selectivity - refocussing Calpha only
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [2 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse (Ca, selective)
;p26: f1 channel -  90 degree pulse at pl19
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH)                                        [5.5 msec]
;d23: 1/(4J(NCa)                                       [12.4 msec]
;d26: 1/(4J'(NH)                                       [2.3 msec]
;d27: 1/(4J`(NCa)                                      [12.5 msec]
;d31: incremented delay (F1 in 4D) = d26
;d32: incremented delay (F2 in 4D) = d23/2-p14/2
;d33: incremented delay (F3 in 4D) = d23/2-p14/2
;d41: decremented delay (F1 in 4D) = d26+p22+p2
;d42: decremented delay (F2 in 4D) = d23/2+p14/2+d52
;d43: decremented delay (F3 in 4D) = d23/2+p14/2+d53
;d51: incremented delay (F1 in 4D)                     [3 usec]
;d52: incremented delay (F2 in 4D)                     [3 usec]
;d53: incremented delay (F3 in 4D)                     [3 usec]
;d62: incremented delay (F2 in 4D) = d23/2-p14/2-p26-d21-4u
;d63: incremented delay (F3 in 4D) = d23/2-p14/2-p26-d21-4u
;cnst19: H(N) chemical shift (offset, in ppm)
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst62: offset for H(N) region (Hz)
;cnst63: additional phase increment to center H(N) region
;o2p: Calpha chemical shift (cnst22)
;inf1: 1/SW(H(N)) = 2 * DW(H(N))
;inf2: 1/SW(N) = 2 * DW(N)
;inf3: 1/SW(N) = 2 * DW(N)
;in31: 1/(2 * SW(H(N))) = DW(H(N))
;nd31: 2
;in32: 1/(4 * SW(N)) = (1/2) DW(N)
;nd32: 4
;in33: 1/(4 * SW(N)) = (1/2) DW(N)
;nd33: 4
;in41: = k1 * in31
;in42: = k2 * in32
;in43: = k3 * in33
;in51: = (1 - k1) * in31
;in52: = (1 - k2) * in32
;in53: = (1 - k3) * in33
;in62: = in32
;in63: = in33
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;td3: number of experiments in F3
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;FnMODE: echo-antiecho in F3
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 80%
;gpz3: 8.1%
;gpz4: 31%
;gpz5: 23%
;gpz6: 41%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100



;$Id: $
