;hncggp3d.1
;avance-version (21/09/15)
;HNCg : reference experiment
;   use hncggp3d.2 as cross peak experiment
;3D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(H) -> F3(N) -> F2(C=O,t1) -> F3(N,t2) -> F1(H,t3)
;
;for determination of 3J NCg (Chi1) using quantitative J
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho gradient selection (t2)
;using constant time in t2
;(use parameterset HNCGGP3D.1)
;
;J.-S. Hu & A. Bax, J. Biomol. NMR 9, 323-328 (1997)
;R. Konrat, D.R. Muhandiram, N.A. Farrow & L.E. Kay,
;   J. Biomol. NMR 9, 409-422 (1997)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define delay DELTA3a
define delay DELTA3b
define delay DELTA4a
define delay DELTA4b


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d11=30m"

"d21=5.5m"
"d23=66.6m"
"d26=2.3m"

"d27=((cnst21-cnst22)*bf2/(1000000*cnst31))*p8"


"d0=3u"
"d10=3u"
"d29=d23/4-larger(p8,p22)/2-p24/2"
"d30=d23/4-d21-p26-p24/2-p21*2/3.1416-4u"

"in0=inf1/2"
"in10=inf2/4"

"in29=in10"
"in30=in10"

"td2=tdmax(td2,d30*2,in30)"


"DELTA=d0*2+larger(p14,p22)-p14"
"DELTA1=d23/4-d21-p26-p24/2-p21*2/3.1416"
"DELTA2=d23/4-p24/2-larger(p8,p22)/2"
"DELTA3a=d23/8+d27/2-larger(p8,p22)/2-p24/2"
"DELTA3b=d23/8+d27/2-p24"
"DELTA4a=d23/8-d27/2-p24"
"DELTA4b=d23/8-d27/2-p24/2-p21*2/3.1416"
"DELTA5=d23/8-d10-d27/2-p24/2-p21*2/3.1416"
"DELTA6=d23/8-d27/2-p24"
"DELTA7=d23/8+d27/2-p24"
"DELTA8=d23/8-d10+d27/2-p24/2-larger(p8,p22)/2"

"DELTA9=d21-p16-d16-4u"
"DELTA10=p16+d16+4u" 


"spoffs7=bf2*((cnst23-cnst21)/1000000)"
"spoffs13=bf2*((cnst21-cnst26)/1000000)"
"spoffs16=bf2*((cnst22-cnst26)/1000000)"
"spoffs17=bf2*((cnst21-cnst26)/1000000)"


"o1_F1=bf2*cnst21/1000000"


aqseq 321


1 d11 ze
  d11 pl16:f3 
2 d11 do:f3
3 d1 pl1:f1 fq=cnst26(bf ppm):f2
  p1 ph1
  d26 pl3:f3
  (center (p2 ph1) (p22 ph1):f3 )
  d26 UNBLKGRAD
  (p1 ph2):f1 

  4u pl0:f1
  (p11:sp1 ph3):f1
  4u
  p16:gp1
  d16

  (p21 ph1):f3
  d21 pl19:f1
  (p26 ph4):f1
  DELTA1 cpds1:f1 ph1
  (p24:sp16 ph1):f2 
  DELTA2
  (center (p8:sp13 ph1):f2 (p22 ph1):f3 )
  DELTA3a
  (p24:sp17 ph1):f2
  DELTA3b
  (p24:sp16 ph1):f2
  DELTA4a
  (p24:sp17 ph1):f2
  DELTA4b
  (p21 ph1):f3

  30u fq=cnst21(bf ppm):f2
  4u do:f1
  (p26 ph8):f1
  p16:gp2
  d16 pl2:f2
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p3 ph5):f2
  d0
  (center (p14:sp7 ph1):f2 (p22 ph1):f3 )
  d0
  4u pl2:f2
  (p4 ph1):f2
  DELTA
  (p14:sp7 ph1):f2
  2u
  2u pl2:f2
  (p3 ph1):f2

  30u fq=cnst26(bf ppm):f2
  4u do:f1
  (p26 ph8):f1
  p16:gp3
  d16
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph6):f3
  DELTA5
  d10
  (p24:sp17 ph11):f2
  DELTA6
  (p24:sp16 ph1):f2
  DELTA7
  (p24:sp17 ph1):f2
  d10
  DELTA8
  (center (p8:sp13 ph1):f2 (p22 ph7):f3 )
  d29
  (p24:sp16 ph1):f2
  d30
  4u do:f1
  (p26 ph8):f1
  4u
  p16:gp4*EA
  d16
  DELTA9 pl1:f1

  (center (p1 ph1) (p21 ph9):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (center (p1 ph2) (p21 ph10):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph1)
  DELTA10
  (p2 ph1)
  p16:gp5
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3 
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph5, +90), caldel(d0, +in0)) 
     F2EA(calgrad(EA) & calph(ph10, +180), caldel(d10, +in10) & caldel(d29, -in29) & caldel(d30, -in30))
exit


ph1=0
ph2=1 
ph3=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph4=1 1 1 1 1 1 1 1 3 3 3 3 3 3 3 3
ph5=0 0 2 2
ph6=0 2
ph7=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph8=3
ph9=0
ph10=3
ph11=0 2
ph31=0 2 2 0 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1 : f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp7 : f2 channel - shaped pulse 180 degree  (Cali off resonance)
;sp13: f2 channel - shaped pulse 180 degree  (C=O off resonance, adiabatic)
;sp16 : f2 channel - shaped pulse 180 degree  (Ca off resonance)
;        sp16 requires higher selectivity - refocussing Calpha only
;sp17: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;        sp17 requires higher selectivity - refocussing C=O only
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse             [2 msec]
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse (selective)
;p26: f1 channel -  90 degree pulse at pl19
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH)                                        [5.5 msec]
;d23: 1/(2J(NCg) = 2*T(N)                              [66.6 msec]
;d26: 1/(4J'(NH)                                       [2.3 msec]
;d27: delay to compensate sweep rate in adiabatic shape (C' - Ca)
;d29: decremented delay (F2 in 3D) = d23/4-p8/2-p24/2
;d30: decremented delay (F2 in 3D) = d23/4-d21-p26-p24/2-p21*2/3.1416-4u
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;cnst26: Call chemical shift (offset, in ppm)          [101 ppm]
;cnst31: total sweepwidth of adiabatic shape (sp13)
;o2p: CO chemical shift (cnst21)
;inf1: 1/SW(CO) = 2 * DW(CO)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(C=O)) =  DW(C=O)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in29: = in10
;in30: = in10
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2 : gp 3 : gp 4 : gp 5
;                         30 :  -75 :   25 :   80 :  8.1

;for z-only gradients:
;gpz1: 30%
;gpz2: -75%
;gpz3: 25%
;gpz4: 80%
;gpz5: 8.1%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100


;F2 reverse: true



;$Id: $
