;hncocacagp3d
;avance-version (21/09/15)
;HN(COCa)Ca
;3D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(H) -> F3(N) -> F2(C=O) -> F2(Ca,t1) 
;            -> F2(C=O) -> F3(N,t2) -> F1(H,t3)
;
;for determination of 3J CaCa (Omega, Psi)using quantitative J
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho gradient selection (t2)
;using constant time in t2
;(use parameterset HNCOCACAGP3D)
;
;M. Hennig, W. Bermel, H. Schwalbe & C. Griesinger, 
;   J. Am. Chem. Soc. 122, 6268-6277 (2000)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple2>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d13=4u"

"d21=5.5m"
"d22=4.55m"
"d23=12.8m"
"d26=2.4m"
"d27=28.6m"


"d0=3u"
"d10=d23/2-p14/2"
"d29=d23/2-p14/2-p26-d21-4u"
"d30=d23/2-p14/2"

"in0=inf1/2"
"in10=inf2/4"

"in29=in10"
"in30=in10"

"td2=tdmax(td2,d30*2,in30)"


"p19=2m"
"p29=750u"
		

"DELTA=d0*2+larger(p14,p22)-p14+36u"
"DELTA1=d23-d21-p26"
"DELTA2=d22-p14-4u"
"DELTA3=d21-p16-d16-4u"
"DELTA4=p16+d16+8u"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst22-cnst21)/1000000)"
"spoffs7=bf2*((cnst21-cnst22)/1000000)"
"spoffs8=0"
"spoffs9=0"
"spoffs15=0"


"o1_F1=bf2*cnst22/1000000"


aqseq 321
		

1 d11 ze
  d11 pl16:f3
2 d11 do:f3
3 d11 pl1:f1 pl3:f3
  d1 fq=cnst21(bf ppm):f2
  50u UNBLKGRAD

  (p21 ph1):f3
  4u
  p19:gp1
  d16*2

  (p1 ph1)
  d26 
  (center (p2 ph1) (p22 ph1):f3 )
  d26 
  (p1 ph2)

  4u
  (p11:sp1 ph1:r):f1
  4u
  p16:gp2
  d16

  (p21 ph3):f3
  d21 pl19:f1
  (p26 ph2):f1
  DELTA1 cpds1:f1 ph1
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p21 ph1):f3

  4u do:f1
  (p26 ph7):f1
  4u
  p16:gp3
  d16
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph1):f2
  DELTA2
  (p14:sp5 ph8):f2
  4u
  (p14:sp3 ph1):f2
  DELTA2
  (p14:sp5 ph8):f2
  4u
  (p13:sp8 ph2):f2

  4u do:f1
  (p26 ph7):f1
  p29:gp4
  d16 fq=cnst22(bf ppm):f2
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph6):f2
  d27
  (p24:sp9 ph8):f2
  d27
  (p13:sp8 ph9):f2

  4u
  4u pl13:f2
  4u cpd8:f2
  d0
  4u do:f2
  4u
  (center (p14:sp7 ph1):f2 (p22 ph1):f3 )
  4u
  4u pl13:f2
  4u cpd8:f2
  d0 
  4u do:f2
  4u
  (p14:sp3 ph1):f2
  DELTA
  (p14:sp7 ph1):f2
  4u

  (p13:sp2 ph2):f2
  d27
  (p24:sp9 ph1):f2
  d27
  (p13:sp8 ph1):f2

  4u do:f1
  (p26 ph7):f1
  p29:gp5
  d16 fq=cnst21(bf ppm):f2
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph1):f2
  DELTA2
  (p14:sp5 ph1):f2
  4u
  (p14:sp3 ph1):f2
  DELTA2
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph2):f2

  4u do:f1
  (p26 ph7):f1
  4u
  p16:gp4
  d16
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph1):f3
  d30
  (p14:sp5 ph1):f2
  d30
  (center (p14:sp3 ph1):f2 (p22 ph4):f3 )
  d10
  (p14:sp5 ph1):f2
  d29
  4u do:f1
  (p26 ph7):f1
  4u
  p16:gp6*EA
  d16 
  DELTA3 pl1:f1

  (center (p1 ph1) (p21 ph4):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (center (p1 ph2) (p21 ph5):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph1)
  DELTA4
  (p2 ph1)
  4u
  p16:gp7
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2
     F1PH(calph(ph6, +90) & calph(ph8, +90) & calph(ph9, +90), caldel(d0, +in0))
     F2EA(calgrad(EA) & calph(ph5, +180), caldel(d10, +in10) & caldel(d29, +in29) & caldel(d30, -in30))
exit

		   
ph1=0
ph2=1
ph3=0 2
ph4=0
ph5=3
ph6=0 0 2 2
ph7=3
ph8=0
ph9=1 1 1 1 3 3 3 3
ph31=0 2 2 0 


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl13: f2 channel - power level for Cbeta/CO decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1 : f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2 : f2 channel - shaped pulse  90 degree  (on resonance)
;sp3 : f2 channel - shaped pulse 180 degree  (on resonance)
;sp5 : f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp7 : f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8 : f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp9: f2 channel - shaped pulse 180 degree   (Ca on resonance)
;     sp9 requires higher selectivity - refocussing Calpha only
;sp15: f2 channel - shaped pulse 180 degree for decoupling
;                                           (Cb off resonance)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [2 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p19: gradient pulse 2                                 [2 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse (Ca, selective)

;p26: f1 channel -  90 degree pulse at pl19
;p29: gradient pulse 3                                 [750 usec]
;p31: f2 channel - 180 degree pulse for decoupling sequence
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D) =  d23/2-p14/2
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH)                                        [5.5 msec]
;d22: 1/(4J(COCa)                                      [4.55 msec]
;d23: 1/(4J(NCO)                                       [12.8 msec]
;d26: 1/(4J'(NH)                                       [2.4 msec]
;d27: 1/(4J'(CaCa)                                     [28.6 msec]
;d29: incremented delay (F2 in 3D) = d23/2-p14/2-p26-d21-4u
;d30: decremented delay (F2 in 3D) = d23/2-p14/2
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o2p: Calpha chemical shift (cnst22)
;inf1: 1/SW(Ca) = 2 * DW(Ca)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Ca)) =  DW(Ca)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in29: = in10
;in30: = in10
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;cpd8: decoupling according to sequence defined by cpdprg8 : p5m4sp180.p31
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:     gp 1 : gp 2 : gp 3 : gp 4 : gp 5 : gp 6 : gp 7
;                          50 :  -50 :   23 :   17 :  -11 :   80 :  8.1

;for z-only gradients:
;gpz1: 50%
;gpz2: -50%
;gpz3: 23%
;gpz4: 17%
;gpz5: -11%
;gpz6: 80%
;gpz7: 8.1%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;$Id: $
