;hncocacbgpwg3d_sct
;avance-version (21/09/15)
;HNCOCACB
;3D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(H) -> F3(N) -> F2(C=O) -> F2(Ca -> Cb,t1)
;            -> F2(C=O) -> F3(N,t2) -> F1(H,t3)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;using semi-constant time in t2
;water suppression using watergate sequence
;(use parameterset HNCOCACBGPWG3D)
;
;T. Yamazaki, W. Lee, C.H. Arrowsmith, D.R. Muhandiram & L.E. Kay,
;   J. Am. Chem. Soc. 116, 11655-11666 (1994)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"

"d21=5.5m"
"d22=4m"
"d23=12.4m"
"d26=2.3m"

#   ifdef LABEL_CB
"d28=7.2m"
#   else
"d28=3.6m"
#   endif /*LABEL_CB*/


"d0=3u"
"d10=3u"
"d29=3u"
"d30=d23/2+p14/2+d29"

"in0=inf1/2"
"in10=inf2/4"

"FACTOR1=d30*10000000*2/td2"
"INCR2=FACTOR1/10000000"

"if ( INCR2 > in10 ) { in29 = 0; } else { in29=in10-INCR2; }"
"if ( INCR2 > in10 ) { in30 = in10; } else { in30 = INCR2; }"


"DELTA1=d23-d21-p26"
"DELTA2=d22-p14-4u"
"DELTA3=d0*2+larger(p14,p22)-p14"
"DELTA4=d26-p16-d16-p11-12u"
"DELTA5=d23/2-p14/2-d10"
"DELTA6=d23/2-p14/2-p26-d21-d10-4u"



"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst22-cnst21)/1000000)"
"spoffs7=bf2*((cnst21-cnst23)/1000000)"
"spoffs8=0"


"o1_F1=bf2*cnst23/1000000"


aqseq 321


1 d11 ze
  d11 pl16:f3 
2 d11 do:f3
3 d1 pl1:f1 fq=cnst21(bf ppm):f2

  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph1) (p22 ph1):f3 )
  d26 UNBLKGRAD
  (p1 ph2):f1 

  4u
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16

  (p21 ph1):f3
  d21 pl19:f1
  (p26 ph2):f1
  DELTA1 cpds1:f1 ph1
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p21 ph1):f3

  (p13:sp2 ph3):f2
  4u
  (p14:sp5 ph1):f2
  DELTA2
  (p14:sp3 ph1):f2
  4u
  (p14:sp5 ph1):f2
  DELTA2
  (p13:sp8 ph2):f2

  4u
  30u fq=cnst23(bf ppm):f2

  (p13:sp2 ph4):f2
  d28
  (p14:sp3 ph1):f2
  d28
  (p13:sp8 ph2):f2

  d0
  (center (p14:sp7 ph1):f2 (p22 ph8):f3 )
  d0
  4u
  (p14:sp3 ph1):f2
  DELTA3
  (p14:sp7 ph1):f2
  4u

  (p13:sp2 ph9):f2
  d28
  (p14:sp3 ph1):f2
  d28
  (p13:sp8 ph10):f2

  4u
  30u fq=cnst21(bf ppm):f2

  (p13:sp2 ph2):f2
  DELTA2
  (p14:sp5 ph1):f2
  4u
  (p14:sp3 ph1):f2
  DELTA2
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u do:f1
  (p26 ph7):f1
  4u
  p16:gp2
  d16
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph5):f3
  d30
  (p14:sp5 ph1):f2
  d30
  (p22 ph8):f3
  d29
  (p14:sp5 ph1):f2
  d29
  (p14:sp3 ph1):f2
  DELTA5
  d10
  (p14:sp5 ph1):f2
  d10
  DELTA6
  4u do:f1
  (p26 ph7):f1
  d21
  (p21 ph1):f3

  p16:gp3
  d16
  (p11:sp1 ph6):f1
  4u
  4u pl1:f1

  (p1 ph1) 
  4u
  p16:gp4
  d16
  DELTA4
  (p11:sp1 ph6):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph6):f1
  4u
  DELTA4
  p16:gp4
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3 
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph9, -90) & calph(ph10, -90), caldel(d0, +in0) & calph(ph9, +180)) 
     F2PH(calph(ph5, -90), caldel(d10, +in10) & caldel(d29, +in29) & caldel(d30, -in30))
exit


ph1=0
ph2=1 
ph3=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph4=0
ph5=0 0 2 2
ph6=2
ph7=3
ph8=0 0 2 2
ph9=3 1
ph10=0 2 0 2 2 0 2 0
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0



;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH)                                        [5.5 msec]
;d22: 1/(4J(COCa)                                      [4 msec]
;d23: 1/(4J(NCO)                                       [12.4 msec]
;d26: 1/(4J'(NH)                                       [2.3 msec]
;d28: 1/(4J(CaCb)                                      [3.6 msec]
;d29: incremented delay (F2 in 3D)                     [3 usec]
;d30: decremented delay (F2 in 3D) = d23/2+p14/2+d29
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o2p: Caliphatic chemical shift (cnst23)
;inf1: 1/SW(Cali) = 2 * DW(Cali)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Cali)) =  DW(Cali)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in29: = (1 - k) * in10
;in30: = k * in10
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 40%
;gpz3: 60%
;gpz4: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100



                                          ;preprocessor-flags-start
;LABEL_CB: for Cb only start experiment with
;             option -DLABEL_CB (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
