;hncocacbnhgpwg7d
;avance-version (21/09/15)
;HNCO(CA)CBCANH
;7D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(H,t1) -> F3(N,t2) -> F2(C=O,t3) -> F2(Ca) 
;               -> F2(Cb,t4) -> F2(Ca,t5) -> F3(N,t6) -> F1(H,t7)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive
;using semi-constant time in t1, t2, t3, t5, t6
;water suppression using watergate sequence
;
;S. Hiller, C. Wasmer, G. Wider & K. Wuethrich,
;   J. Am. Chem. Soc. 129, 10823-10828 (2007)
;(F. Fiorito, S. Hiller, G. Wider & K. Wuethrich, 
;   J. Biomol. NMR 35, 27-37 (2006))
;
;$CLASS=HighRes
;$DIM=7D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d21=5.5m"
"d22=4.5m"
"d23=14m"
"d26=2.7m"
"d27=21.6m"
"d28=7.2m"


"d32=3u"
"d34=3u"
"d35=3u"
"d36=3u"
"d51=3u"
"d52=3u"
"d53=3u"
"d55=3u"
"d56=3u"

"d31=d26"
"d33=d22-p14-d53"
"d41=d26+p22+d51"
"d42=d23-d21-p26*2"
"d43=d22-p14-4u"
"d45=d27-p14-4u"
"d46=d23-d21-p26-4u"

"in31=inf1/2"
"in32=inf2/2"
"in33=inf3/2"
"in34=inf4/2"
"in35=inf5/2"
"in36=inf6/2"

"FACTOR1=d41*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in31 ) { in41 = in31; } else { in41 = INCR1; }"
"if ( INCR1 > in31 ) { in51 = 0; } else { in51=in31-INCR1; }"


"FACTOR2=d42*10000000*2/td2"
"INCR2=FACTOR2/10000000"

"if ( INCR2 > in32 ) { in42 = in32; } else { in42 = INCR2; }"
"if ( INCR2 > in32 ) { in52 = 0; } else { in52=in32-INCR2; }"

"FACTOR3=d43*10000000*2/td3"
"INCR3=FACTOR3/10000000"

"if ( INCR3 > in33 ) { in43 = in33; } else { in43 = INCR3; }"
"if ( INCR3 > in33 ) { in53 = 0; } else { in53=in33-INCR3; }"

"FACTOR5=d45*10000000*2/td5"
"INCR5=FACTOR5/10000000"

"if ( INCR5 > in35 ) { in45 = in35; } else { in45 = INCR5; }"
"if ( INCR5 > in35 ) { in55 = 0; } else { in55=in35-INCR5; }"

"FACTOR6=d46*10000000*2/td6"
"INCR6=FACTOR6/10000000"

"if ( INCR6 > in36 ) { in46 = in36; } else { in46 = INCR6; }"
"if ( INCR6 > in36 ) { in56 = 0; } else { in56=in36-INCR6; }"


"DELTA1=d23-d22-p14"
"DELTA2=p26+d21"
"DELTA3=d23-d32-p14*2-d52"
"DELTA4=d23-d36-p14*2-d56"
"DELTA6=d28-d22+4u"
"DELTA5=d26-p16-d16-p11-12u"
"DELTA7=d34*2+larger(p14,p22)-p14"
"DELTA8=d27-d35-p14-p22-d55"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst22-cnst21)/1000000)"
"spoffs7=bf2*((cnst21-cnst23)/1000000)"
"spoffs8=0"


"o1_F1=bf1*cnst19/1000000"
"o1_F3=bf2*cnst21/1000000"
"o1_F4=bf2*cnst23/1000000"
"o1_F5=bf2*cnst23/1000000"


1 ze

  d11 pl16:f3 
2 d11 do:f3
3 d1 pl1:f1 fq=cnst21(bf ppm):f2
  d12 pl3:f3 fq=cnst19(bf ppm):f1

  (p1 ph5)
  d31
  (p22 ph1):f3
  d51
  (p2 ph1)
  d41 UNBLKGRAD
  (p1 ph2):f1 

  30u fq=cnst18(bf ppm):f1
  4u
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16

  (p21 ph6):f3
  d21 pl19:f1
  (p26 ph1):f1
  (p26 ph2):f1
  d42 cpds1:f1 ph1
  (p22 ph1):f3
  d52
  (p14:sp3 ph1):f2
  DELTA3
  (p14:sp5 ph1):f2
  d32
  (p21 ph1):f3

  4u do:f1
  (p26 ph4):f1 
  p16:gp2
  d16
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p13:sp2 ph7):f2
  (
   refalign (d33 p14:sp5 ph1 d53):f2 
   center (p22 ph1):f3
  )
  (p14:sp3 ph1):f2
  (
   refalign (d43 p14:sp5 ph1 4u):f2 
   center (p22 ph1):f3
  )
  (p13:sp8 ph2):f2

  4u
  30u fq=cnst23(bf ppm):f2

  (p13:sp2 ph10):f2
  d22
  (p14:sp7 ph1):f2
  DELTA6
  (p14:sp3 ph1):f2
  d28
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph11):f2

  d34
  (center (p14:sp7 ph1):f2 (p22 ph1):f3 )
  d34
  4u
  (p14:sp3 ph1):f2
  DELTA7
  (p14:sp7 ph1):f2
  4u

  (p13:sp2 ph1):f2
  d35
  (p14:sp7 ph1):f2
  DELTA8
  (p22 ph1):f3
  d55
  (p14:sp3 ph1):f2
  d45
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph8):f2

  4u do:f1
  (p26 ph4):f1 
  p16:gp3
  d16
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p21 ph9):f3
  d36
  (p14:sp7 ph1):f2
  DELTA4
  (p14:sp3 ph1):f2
  d56
  (p22 ph1):f3
  d46
  4u do:f1
  (p26 ph4):f1 
  d21
  (p21 ph1):f3

  p16:gp4
  d16
  (p11:sp1 ph3):f1
  4u
  4u pl1:f1

  (p1 ph1) 
  4u
  p16:gp5
  d16
  DELTA5
  (p11:sp1 ph3):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph3):f1
  4u
  DELTA5
  p16:gp5
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3 
  d11 do:f3 mc #0 to 2
     F1PH(calph(ph5, +90), caldel(d31, +in31) & caldel(d41, -in41) & caldel(d51, +in51))
     F2PH(calph(ph6, -90), caldel(d32, +in32) & caldel(d42, -in42) & caldel(d52, +in52))
     F3PH(calph(ph7, +90), caldel(d33, +in33) & caldel(d43, -in43) & caldel(d53, +in53))
     F4PH(calph(ph10, -90) & calph(ph11, -90), caldel(d34, +in34))
     F5PH(calph(ph8, +90), caldel(d35, +in35) & caldel(d45, -in45) & caldel(d55, +in55))
     F6PH(calph(ph9, +90), caldel(d36, +in36) & caldel(d46, -in46) & caldel(d56, +in56))
exit


ph1=0
ph2=1
ph3=2
ph4=3
ph5=0
ph6=0 0 0 0 2 2 2 2
ph7=2 2 2 2 2 2 2 2 0 0 0 0 0 0 0 0
ph8=1 3
ph9=0 0 2 2
ph10=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph11=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH)                                        [5.5 msec]
;d22: 1/(4J(COCa)                                      [4.5 msec]
;d23: 1/(4J(NCO)                                       [14 msec]
;d26: 1/(4J(NH)                                        [2.7 msec]
;d27: 1/(4J(NCa)                                       [21.6 msec]
;d28: 1/(4J(CaCb)                                      [7.2 msec]
;d31: incremented delay (F1 in 7D) = d26
;d32: incremented delay (F2 in 7D)                     [3 usec]
;d33: incremented delay (F3 in 7D) = d22-p14-d53
;d34: incremented delay (F4 in 7D)                     [3 usec]
;d35: incremented delay (F5 in 7D)                     [3 usec]
;d36: incremented delay (F6 in 7D)                     [3 usec]
;d41: decremented delay (F1 in 7D) = d26+p22+d51
;d42: decremented delay (F2 in 7D) = d23-d21-p26*2
;d43: decremented delay (F3 in 7D) = d22-p14-4u
;d45: decremented delay (F5 in 7D) = d27-p14-4u
;d46: decremented delay (F6 in 7D) = d23-d21-p26-4u
;d51: incremented delay (F1 in 7D)                     [3 usec]
;d52: incremented delay (F2 in 7D)                     [3 usec]
;d53: incremented delay (F3 in 7D)                     [3 usec]
;d55: incremented delay (F5 in 7D)                     [3 usec]
;d56: incremented delay (F6 in 7D)                     [3 usec]
;cnst18: H2O chemical shift (offset, in ppm)
;cnst19: H(N) chemical shift (offset, in ppm)
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o2p: Calpha chemical shift (cnst22)
;inf1: 1/SW(HN) = 2 * DW(HN)
;inf2: 1/SW(N) = 2 * DW(N)
;inf3: 1/SW(CO) = 2 * DW(CO)
;inf5: 1/SW(Ca) = 2 * DW(Ca)
;inf6: 1/SW(N) = 2 * DW(N)
;in31: 1/(2 * SW(HN)) = DW(HN)
;in32: 1/(2 * SW(N)) = DW(N)
;in33: 1/(2 * SW(CO)) = DW(CO)
;in35: 1/(2 * SW(Ca)) = DW(Ca)
;in36: 1/(2 * SW(N)) = DW(N)
;in41: = k1 * in31
;in42: = k2 * in32
;in43: = k3 * in33
;in45: = k5 * in35
;in46: = k6 * in36
;in51: = (1 - k1) * in31
;in52: = (1 - k2) * in32
;in53: = (1 - k3) * in33
;in55: = (1 - k4) * in35
;in56: = (1 - k5) * in36
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;td3: number of experiments in F3
;td4: number of experiments in F4
;td5: number of experiments in F5
;td6: number of experiments in F6
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;FnMODE: States-TPPI (or TPPI) in F3
;FnMODE: States-TPPI (or TPPI) in F4
;FnMODE: States-TPPI (or TPPI) in F5
;FnMODE: States-TPPI (or TPPI) in F6
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: -67%
;gpz3: 40%
;gpz4: 60%
;gpz5: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100



;$Id: $
