;hncocahahbgpwg3d
;avance-version (21/09/15)
;HN(COCA)HAHB
;3D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(H) -> F3(N) -> F2(C=O) -> F2(Ca) -> F1(Ha)
;            -> F1(Hb,t1) -> F2(Ca) -> F2(C=O)
;            -> F3(N,t2) -> F1(H,t3)
;
;for determination of 3J HaHb (Chi1) using quantitative J
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t2
;water suppression using watergate sequence
;(use parameterset )
;
;M.J. Haehnke, C. Richter, F. Heinicke & H. Schwalbe, 
;   J. Am. Chem. Soc. 132, 918-919 (2010)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d4=1.5m"
"d21=5.5m"
"d22=4.5m"
"d23=12m"
"d26=2.3m"

"if ( td1 == 1 ) { d27 = 10u; } else { d27 = 10m;}"


"d0=3u"
"d10=d23/2-p14/2"
"d29=d23/2-p14/2-p26-d21-4u"
"d30=d23/2-p14/2"

"in0=inf1/2"
"in10=inf2/4"

"in29=in10"
"in30=in10"

"td2=tdmax(td2,d30*2,in30)"


"DELTA=d0*2+larger(p8,p22)"
"DELTA1=d23-d21-p26"
"DELTA2=d22-p14-4u"
"DELTA3=d26-p16-d16-p11-p1*2/PI-12u"
"DELTA4=d26-p16-d16-p11-de-12u"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst22-cnst21)/1000000)"
"spoffs8=0"
"spoffs13=bf2*((cnst26-cnst22)/1000000)"


"o1_F1=o1+(bf1*cnst63/1000000)"


"acqt0=0"
baseopt_echo


aqseq 321


1 d11 ze
  d11 pl16:f3 
2 d11 do:f3
3 d12 pl32:f1
  d1 cw:f1 ph29
  4u do:f1
  20u pl1:f1 fq=cnst21(bf ppm):f2

  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph1) (p22 ph1):f3 )
  d26 UNBLKGRAD
  (p1 ph2):f1 

  4u
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16

  (p21 ph1):f3
  d21 pl19:f1
  (p26 ph2):f1
  DELTA1 cpds1:f1 ph1
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p21 ph1):f3

  (p13:sp2 ph1):f2
  4u
  (p14:sp5 ph1):f2
  DELTA2
  (p14:sp3 ph1):f2
  4u
  (p14:sp5 ph1):f2
  DELTA2
  (p13:sp8 ph2):f2

  4u do:f1
  (p26 ph10):f1
  4u
  p16:gp2
  d16 pl1:f1 fq=cnst22(bf ppm):f2
  20u fq=cnst63(sfo ppm):f1

  (p13:sp2 ph3):f2
  d4
  (center (p2 ph4) (p14:sp3 ph1):f2 )
  d4
  (p13:sp8 ph2):f2

  (p1 ph5)
  d27
  (p2 ph4)
  d27
  (p1 ph6)

  d0
  (center (p8:sp13 ph1):f2 (p22 ph1):f3 )
  d0
  (p2 ph1)
  DELTA

  (p1 ph1)
  d27
  (p2 ph1)
  d27
  (p1 ph2)

  (p13:sp2 ph2):f2
  d4
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  d4
  (p13:sp8 ph1):f2

  p16:gp3
  d16 pl19:f1 fq=cnst21(bf ppm):f2
  20u fq=0(sfo ppm):f1
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph2):f2
  DELTA2
  (p14:sp5 ph1):f2
  4u
  (p14:sp3 ph1):f2
  DELTA2
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u do:f1
  (p26 ph2):f1
  4u
  p16:gp4
  d16
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph7):f3
  d30
  (p14:sp5 ph1):f2
  d30
  (center (p14:sp3 ph1):f2 (p22 ph8):f3 )
  d10
  (p14:sp5 ph1):f2
  d29
  4u do:f1
  (p26 ph10):f1
  d21
  (p21 ph1):f3

  p16:gp5
  d16
  (p11:sp1 ph9):f1
  4u
  4u pl1:f1

  (p1 ph1) 
  4u
  p16:gp6
  d16
  DELTA3
  (p11:sp1 ph9):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph9):f1
  4u
  DELTA4
  p16:gp6
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3 
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph4, +90) & calph(ph5, +90) & calph(ph6, +90), caldel(d0, +in0)) 
     F2PH(calph(ph7, -90), caldel(d10, +in10) & caldel(d29, +in29) & caldel(d30, -in30))
exit


ph1=0
ph2=1 
ph3=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph4=0
ph5=1
ph6=0 2
ph7=0 0 2 2
ph8=0 0 0 0 2 2 2 2
ph9=2
ph10=3
ph29=0
ph31=0 0 2 2 0 0 2 2 2 2 0 0 2 2 0 0


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;pl32: f1 channel - power level for low power presaturation
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CH)                                        [1.5 msec]
;d10: incremented delay (F2 in 3D) =  d23/2-p14/2
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH)                                        [5.5 msec]
;d22: 1/(4J(COCa)                                      [4.5 msec]
;d23: 1/(4J(NCO)                                       [12 msec]
;d26: 1/(4J'(NH)                                       [2.3 msec]
;d27: 1/(4J'(HaHb))                                    [10 msec]
;d29: incremented delay (F2 in 3D) = d23/2-p14/2-p26-d21-4u
;d30: decremented delay (F2 in 3D) = d23/2-p14/2
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst26: Call chemical shift (offset, in ppm)           [101 ppm]
;cnst63: Hab offset relative to O1p (in ppm)            [-1.7 ppm]
;o2p: Calpha chemical shift (cnst22)
;inf1: 1/SW(Hab) = 2 * DW(Hab)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Hab)) =  DW(Hab)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in29: = in10
;in30: = in10
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: -70%
;gpz2: -50%
;gpz3: 40%
;gpz4: -60%
;gpz5: 70%
;gpz6: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100



;$Id: $
