;hncocanconhgpwg7d
;avance-version (21/09/15)
;HNCOCANCONH
;7D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(H, t1) -> F3(N,t2) -> F2(C=O,t3) -> F2(Ca,t4) 
;                -> F3(N) -> F2(C=O,t5) -> F3(N,t6) -> F1(H,t7)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive
;using semi-constant time in t1, t2, t3, t4, t6
;water suppression using watergate sequence
;
;(F. Fiorito, S. Hiller, G. Wider & K. Wuethrich, 
;   J. Biomol. NMR 35, 27-37 (2006))
;
;$CLASS=HighRes
;$DIM=7D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d21=5.5m"
"d22=4.5m"
"d23=14m"
"d26=2.7m"
"d27=25m"


"d32=3u"
"d35=3u"
"d36=3u"
"d51=3u"
"d52=3u"
"d53=3u"
"d56=3u"

"d31=d26"
"d33=d22-p14-d53"
"d34=d22"
"d41=d26+p22+d51"
"d42=d23-d21-p26*2"
"d43=d22-p14-4u"
"d44=d27-p14-4u"
"d46=d23-d21-p26-4u"
"d54=d27-d34-p14"

"in31=inf1/2"
"in32=inf2/2"
"in33=inf3/2"
"in34=inf4/2"
"in35=inf5/2"
"in36=inf6/2"

"FACTOR1=d41*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in31 ) { in41 = in31; } else { in41 = INCR1; }"
"if ( INCR1 > in31 ) { in51 = 0; } else { in51=in31-INCR1; }"


"FACTOR2=d42*10000000*2/td2"
"INCR2=FACTOR2/10000000"

"if ( INCR2 > in32 ) { in42 = in32; } else { in42 = INCR2; }"
"if ( INCR2 > in32 ) { in52 = 0; } else { in52=in32-INCR2; }"

"FACTOR3=d43*10000000*2/td3"
"INCR3=FACTOR3/10000000"

"if ( INCR3 > in33 ) { in43 = in33; } else { in43 = INCR3; }"
"if ( INCR3 > in33 ) { in53 = 0; } else { in53=in33-INCR3; }"

"FACTOR4=d44*10000000*2/td4"
"INCR4=FACTOR4/10000000"

"if ( INCR4 > in34 ) { in44 = in34; } else { in44 = INCR4; }"
"if ( INCR4 > in34 ) { in54 = 0; } else { in54=in34-INCR4; }"

"FACTOR6=d46*10000000*2/td6"
"INCR6=FACTOR6/10000000"

"if ( INCR6 > in36 ) { in46 = in36; } else { in46 = INCR6; }"
"if ( INCR6 > in36 ) { in56 = 0; } else { in56=in36-INCR6; }"


"DELTA1=d23-d22-p14"
"DELTA2=p26+d21"
"DELTA3=d23-d32-p14*2-d52"
"DELTA4=d23-p14-4u"
"DELTA5=d26-p16-d16-p11-12u"
"DELTA6=d35*2+larger(p14,p22)-p14-4u"
"DELTA7=d23-d36-p14*2-d56"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst22-cnst21)/1000000)"
"spoffs7=bf2*((cnst21-cnst22)/1000000)"
"spoffs8=0"


"o1_F1=bf1*cnst19/1000000"
"o1_F3=bf2*cnst21/1000000"
"o1_F4=bf2*cnst22/1000000"
"o1_F5=bf2*cnst21/1000000"


1 ze

  d11 pl16:f3 
2 d11 do:f3
3 d1 pl1:f1 fq=cnst21(bf ppm):f2
  d12 pl3:f3 fq=cnst19(bf ppm):f1

  (p1 ph5)
  d31
  (p22 ph1):f3
  d51
  (p2 ph1)
  d41 UNBLKGRAD
  (p1 ph2):f1 

  30u fq=cnst18(bf ppm):f1
  4u
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16

  (p21 ph6):f3
  d21 pl19:f1
  (p26 ph1):f1
  (p26 ph2):f1
  d42 cpds1:f1 ph1
  (p22 ph1):f3
  d52
  (p14:sp3 ph1):f2
  DELTA3
  (p14:sp5 ph1):f2
  d32
  (p21 ph1):f3

  4u do:f1
  (p26 ph4):f1 
  p16:gp2
  d16
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p13:sp2 ph7):f2
  (
   refalign (d33 p14:sp5 ph1 d53):f2 
   center (p22 ph1):f3
  )
  (p14:sp3 ph1):f2
  (
   refalign (d43 p14:sp5 ph1 4u):f2 
   center (p22 ph1):f3
  )
  (p13:sp8 ph2):f2

  4u
  30u fq=cnst22(bf ppm):f2

  (p13:sp2 ph8):f2
  d34
  (p14:sp7 ph1):f2
  d54
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d44
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph2):f2

  (p21 ph1):f3
  DELTA4
  (p14:sp7 ph1):f2
  4u
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p21 ph1):f3

  4u do:f1
  (p26 ph4):f1 
  p16:gp3
  d16 fq=cnst21(bf ppm):f2
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p13:sp2 ph9):f2
  d35
  (center (p14:sp5 ph1):f2 (p22 ph1):f3 )
  d35
  (p14:sp3 ph1):f2
  DELTA6
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u do:f1
  (p26 ph4):f1 
  p16:gp4
  d16
  (p26 ph2):f1
  4u cpds1:f1 ph1

  (p21 ph10):f3
  d36
  (p14:sp5 ph1):f2
  DELTA7
  (p14:sp3 ph1):f2
  d56
  (p22 ph1):f3
  d46
  4u do:f1
  (p26 ph4):f1 
  d21
  (p21 ph1):f3

  p16:gp5
  d16
  (p11:sp1 ph3):f1
  4u
  4u pl1:f1

  (p1 ph1) 
  4u
  p16:gp6
  d16
  DELTA5
  (p11:sp1 ph3):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph3):f1
  4u
  DELTA5
  p16:gp6
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3 
  d11 do:f3 mc #0 to 2
     F1PH(calph(ph5, +90), caldel(d31, +in31) & caldel(d41, -in41) & caldel(d51, +in51))
     F2PH(calph(ph6, -90), caldel(d32, +in32) & caldel(d42, -in42) & caldel(d52, +in52))
     F3PH(calph(ph7, +90), caldel(d33, +in33) & caldel(d43, -in43) & caldel(d53, +in53))
     F4PH(calph(ph8, +90), caldel(d34, +in34) & caldel(d44, -in44) & caldel(d54, +in54))
     F5PH(calph(ph9, +90), caldel(d35, +in35))
     F6PH(calph(ph10, +90), caldel(d36, +in36) & caldel(d46, -in46) & caldel(d56, +in56))
exit


ph1=0
ph2=1
ph3=2
ph4=3
ph5=0
ph6=0 0 0 0 2 2 2 2
ph7=2 2 2 2 2 2 2 2 0 0 0 0 0 0 0 0
ph8=0 2
ph9=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph10=0 0 2 2
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH)                                        [5.5 msec]
;d22: 1/(4J(COCa)                                      [4.5 msec]
;d23: 1/(4J(NCO)                                       [14 msec]
;d26: 1/(4J(NH)                                        [2.7 msec]
;d27: 1/(4J(NCa)                                       [25 msec]
;d31: incremented delay (F1 in 7D) = d26
;d32: incremented delay (F2 in 7D)                     [3 usec]
;d33: incremented delay (F3 in 7D) = d22-p14-d53
;d34: incremented delay (F4 in 7D) = d22
;d35: incremented delay (F5 in 7D)                     [3 usec]
;d36: incremented delay (F6 in 6D)                     [3 usec]
;d41: decremented delay (F1 in 7D) = d26+p22+d51
;d42: decremented delay (F2 in 7D) = d23-d21-p26*2
;d43: decremented delay (F3 in 7D) = d22-p14-4u
;d44: decremented delay (F4 in 7D) = d27-p14-4u
;d46: decremented delay (F6 in 7D) = d23-d21-p26-4u
;d51: incremented delay (F1 in 7D)                     [3 usec]
;d52: incremented delay (F2 in 7D)                     [3 usec]
;d53: incremented delay (F3 in 7D)                     [3 usec]
;d54: incremented delay (F4 in 7D) = d27-d34-p14
;d56: incremented delay (F6 in 7D)                     [3 usec]
;cnst18: H2O chemical shift (offset, in ppm)
;cnst19: H(N) chemical shift (offset, in ppm)
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o2p: Calpha chemical shift (cnst22)
;inf1: 1/SW(HN) = 2 * DW(HN)
;inf2: 1/SW(N) = 2 * DW(N)
;inf3: 1/SW(CO) = 2 * DW(CO)
;inf4: 1/SW(Ca) = 2 * DW(Ca)
;inf5: 1/SW(N) = 2 * DW(N)
;in31: 1/(2 * SW(HN)) = DW(HN)
;in32: 1/(2 * SW(N)) = DW(N)
;in33: 1/(2 * SW(CO)) = DW(CO)
;in34: 1/(2 * SW(Ca)) = DW(Ca)
;in36: 1/(2 * SW(N)) = DW(N)
;in41: = k1 * in31
;in42: = k2 * in32
;in43: = k3 * in33
;in44: = k4 * in34
;in46: = k5 * in36
;in51: = (1 - k1) * in31
;in52: = (1 - k2) * in32
;in53: = (1 - k3) * in33
;in54: = (1 - k4) * in34
;in56: = (1 - k5) * in36
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;td3: number of experiments in F3
;td4: number of experiments in F4
;td5: number of experiments in F5
;td6: number of experiments in F6
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;FnMODE: States-TPPI (or TPPI) in F3
;FnMODE: States-TPPI (or TPPI) in F4
;FnMODE: States-TPPI (or TPPI) in F5
;FnMODE: States-TPPI (or TPPI) in F6
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: -67%
;gpz3: 40%
;gpz4: 20%
;gpz5: 60%
;gpz6: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100



;$Id: $
