;hncocgp3d
;avance-version (21/09/15)
;HN(CO)C
;3D sequence with
;   inverse correlation for triple resonance using inept transfer steps
;      and correlation via heteronuclear zero and double quantum coherence
;
;      F1(H) -> F3(N) -> F2(C=O) -> F2(Cg,t1) 
;                     -> F2(C=O) -> F3(N,t2) -> F1(H,t3)
;
;for determination of 3J CgC' (Chi1) using quantitative J
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho gradient selection (t2)
;using constant time in t2
;(use parameterset HNCOCGP3D)
;
;J.-S. Hu & A. Bax, J. Am. Chem. Soc. 119, 6360 - 6368 (1997)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"

"d21=5.4m"
"d23=13.8m"
"d26=2.3m"
"d27=12.5m"


"d25=56.1m-cnst25*9.4m"


"d0=3u"
"d10=d23/2-p14/2"
"d29=d23/2-p14/2-p26-d21-4u"
"d30=d23/2-p14/2"

"in0=inf1/2"
"in10=inf2/4"

"in29=in10"
"in30=in10"

"td2=tdmax(td2,d30*2,in30)"


"DELTA=d0*2+larger(p14,p22)-p14"
"DELTA1=p16+d16+8u" 
"DELTA2=d27-d21-p26"
"DELTA3=d25/2-p14-4u"
"DELTA4=d21-p16-d16"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst23-cnst21)/1000000)"
"spoffs7=bf2*((cnst21-cnst23)/1000000)"
"spoffs8=0"


"o1_F1=bf2*cnst23/1000000"


aqseq 321


1 d11 ze
  d11 pl16:f3 
2 d11 do:f3
3 d1 pl1:f1 fq=cnst21(bf ppm):f2
  p1 ph1
  d26 pl3:f3
  (center (p2 ph1) (p22 ph1):f3 )
  d26 UNBLKGRAD
  (p1 ph2):f1 

  4u pl0:f1
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16

  (p21 ph3):f3
  d21 pl19:f1
  (p26 ph2):f1
  DELTA2 cpds1:f1 ph1
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d27
  (p21 ph1):f3

  4u do:f1
  (p26 ph9):f1
  p16:gp2
  d16
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph4):f2
  4u
  (p14:sp5 ph1):f2
  DELTA3
  (p14:sp3 ph1):f2
  4u
  (p14:sp5 ph1):f2
  DELTA3
  (p13:sp8 ph2):f2

  4u
  30u fq=cnst23(bf ppm):f2

  (p13:sp2 ph5):f2
  d0
  (p14:sp7 ph6):f2
  d0
  4u
  (p14:sp3 ph1):f2
  DELTA
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph7):f2

  4u
  30u fq=cnst21(bf ppm):f2

  (p13:sp2 ph2):f2
  DELTA3
  (p14:sp5 ph1):f2
  4u
  (p14:sp3 ph1):f2
  DELTA3
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u do:f1
  (p26 ph9):f1
  p16:gp3
  d16
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph12):f3
  d30
  (p14:sp5 ph1):f2
  d30
  (center (p14:sp3 ph1):f2 (p22 ph8):f3 )
  d10
  (p14:sp5 ph1):f2
  d29
  4u do:f1
  (p26 ph9):f1
  p16:gp4*EA
  d16
  DELTA4 pl1:f1

  (center (p1 ph1) (p21 ph10):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (center (p1 ph2) (p21 ph11):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph1)
  DELTA1
  (p2 ph1)
  4u
  p16:gp5
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3 
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph5, +90), caldel(d0, +in0)) 
     F2EA(calgrad(EA) & calph(ph11, +180), caldel(d10, +in10) & caldel(d29, +in29) & caldel(d30, -in30) & calph(ph12, +180) & calph(ph31, +180))
exit


ph1=0
ph2=1 
ph3=0
ph4=0
ph5=0 2
ph6=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
ph7=0 0 2 2
ph8=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph9=3
ph10=0
ph11=3
ph12=0
ph30=0 0 2 2 2 2 0 0 2 2 0 0 0 0 2 2
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0 


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (C=O on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (C=O on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (Cali off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (C=O on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [2 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D) = d23/2-p14/2
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH))                                       [5.4 msec]
;d23: 1/(4J(NCO))                                      [13.8 msec]
;d25: cross peak experiment: 1/(2J(CgCO)               [56.1 msec]
;     reference exepriment:                            [46.7 msec]
;d26: 1/(4J'(NH))                                      [2.3 msec]
;d27: 1/(4J'(NCO))                                     [12.5 msec]
;d29: incremented delay (F2 in 3D) = d23/2-p14/2-p26-d21-4u
;d30: decremented delay (F2 in 3D) = d23/2-p14/2
;cnst21: CO chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o2p: Caliphatic chemical shift (cnst23)
;cnst25: = 0 for cross peak experiment
;          1 for reference experiment
;inf1: 1/SW(Cg) = 2 * DW(Cg)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Cg)) =  DW(Cg)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in29: = in10
;in30: = in10
;ns: 8 * n
;ds: >= 32
;td1: number of experiments in F1
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2 : gp 3 : gp 4 : gp 5
;                         60 :  -40 :   10 :   80 :  8.1

;for z-only gradients:
;gpz1: 60%
;gpz2: -40%
;gpz3: 10%
;gpz4: 80%
;gpz5: 8.1%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100



;$Id: $
