;hncot2f3gpsi
;avance-version (21/09/15)
;HNCO-T2
;3D sequence with
;   inverse correlation for triple resonance using multiple
;      inept transfer steps
;
;      F1(H) -> F3(N:T2) -> F2(C=O,t1) -> F3(N,t2) -> F1(H,t3)
;
;for measuring N-15 T2 relaxation times
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho gradient selection (t2)
;using constant time in t2
;(use parameterset )
;
;(S. Grzesiek & A. Bax, J. Magn. Reson. 96, 432 - 440 (1992))
;(J. Schleucher, M. Sattler & C. Griesinger, Angew. Chem. Int. Ed. 32,
;   1489-1491 (1993))
;(L.E. Kay, G.Y. Xu & T. Yamazaki, J. Magn. Reson. A109, 129-133 (1994))
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d21=5.5m"
"d23=12m"
"d25=2.75m"
"d26=2.3m"
"d28=450u"


"d0=3u"
"d10=d23/2-p14/2"
"d29=d23/2-p14/2-p26-d21-4u"
"d30=d23/2-p14/2"

"in0=inf1/2"
"in10=inf2/4"

"in29=in10"
"in30=in10"

"td2=tdmax(td2,d30*2,in30)"


"DELTA=d0*2+larger(p14,p22)-p14"
"DELTA1=p16+d16+8u" 
"DELTA2=d21-p16-d16-4u"
"DELTA3=d28-p2/2"


"COUNTER=l5*4"

"l4=d20/(p30*16+d28*32)"
"d31=(p30*16+d28*32)*l4"


"spoffs1=0"
"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*(cnst22/1000000)-o2"
"spoffs8=0"


aqseq 321


1 d11 ze
  d11 pl16:f3 
2 d11 do:f3
3 d12 pl1:f1 pl23:f3

4 d28
  (p30 ph1 d28*2 p30 ph1 d28*2 p30 ph1 d28*2 p30 ph1):f3
  d28
  lo to 4 times COUNTER

  d1

  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph2) (p22 ph1):f3 )
  d26 UNBLKGRAD
  (p1 ph2):f1 

  4u pl0:f1
  (p11:sp1 ph1:r):f1
  4u
  p16:gp3
  d16 pl1:f1

  (p21 ph1):f3
  4u
  d25
  (center (p2 ph1) (p22 ph8):f3 )
  d25 pl23:f3

5 d28
  (p30 ph8 d28*2 p30 ph8 d28*2 p30 ph8 d28*2 p30 ph8):f3
  DELTA3
  (p2 ph1)
  DELTA3
  (p30 ph8 d28*2 p30 ph8 d28*2 p30 ph8 d28*2 p30 ph8):f3
  d28*2
  (p30 ph8 d28*2 p30 ph8 d28*2 p30 ph8 d28*2 p30 ph8):f3
  DELTA3
  (p2 ph9)
  DELTA3
  (p30 ph8 d28*2 p30 ph8 d28*2 p30 ph8 d28*2 p30 ph8):f3
  d28
  lo to 5 times l4

  4u pl3:f3
  (p21 ph2):f3

  p16:gp4
  d16 pl19:f1
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph3):f3
  d23
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p21 ph2):f3

  4u do:f1
  (p26 ph7):f1
  4u
  p16:gp5
  d16

  (p13:sp2 ph4):f2
  d0
  (center (p14:sp5 ph1):f2 (p22 ph1):f3 )
  d0
  4u
  (p14:sp3 ph1):f2
  DELTA
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u
  p16:gp6
  d16
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p21 ph1):f3
  d30
  (p14:sp5 ph1):f2
  d30
  (center (p14:sp3 ph1):f2 (p22 ph8):f3 )
  d10
  (p14:sp5 ph1):f2
  d29
  4u do:f1
  (p26 ph7):f1
  4u
  p16:gp1*EA
  d16 
  DELTA2 pl1:f1

  (center (p1 ph1) (p21 ph5):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (center (p1 ph2) (p21 ph6):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph1)
  DELTA1
  (p2 ph1)
  4u
  p16:gp2
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3 
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph4, +90), caldel(d0, +in0)) 
     F2EA(calgrad(EA) & calph(ph6, +180), caldel(d10, +in10) & caldel(d29, +in29) & caldel(d30, -in30))
  d31
exit


ph1=0
ph2=1 
ph3=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph4=0 2
ph5=0 0 2 2
ph6=3 3 1 1
ph7=3
ph8=0 0 0 0 2 2 2 2
ph9=2
ph31=0 2 2 0 0 2 2 0 2 0 0 2 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;pl23: f3 channel - power level for CPMG-spinlock
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (C=O on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (C=O on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (C=O on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [2 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;p30: f3 channel - 180 degree pulse at pl23
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D) =  d23/2-p14/2
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: wanted T2 delay
;d21: 1/(2J(NH)                                        [5.5 msec]
;d23: 1/(4J(NCO)                                       [12 msec]
;d25: 1/(4J(NH)                                        [2.75 msec]
;d26: 1/(4J'(NH)                                       [2.3 msec]
;d28: echo delay                                       [450 usec]
;d29: incremented delay (F2 in 3D) = d23/2-p14/2-p26-d21-4u
;d30: decremented delay (F2 in 3D) = d23/2-p14/2
;d31: T2 delay as executed
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;o2p: CO chemical shift (cnst21)
;l4: loop for T2 delay
;l5: loop for compensation of heating effects = l4(max) - l4(current)
;inf1: 1/SW(CO) = 2 * DW(CO)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(CO)) =  DW(CO)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in29: = in10
;in30: = in10
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2 : gp 3 : gp 4 : gp 5 : gp 6
;                         80 :  8.1 :   60 :   40 :  -30 :   20

;for z-only gradients:
;gpz1: 80%
;gpz2: 8.1%
;gpz3: 60%
;gpz4: 40%
;gpz5: -30%
;gpz6: 20%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100



;$Id: $
