;hnhagp3d
;avance-version (12/01/11)
;HNHA
;3D sequence with
;   inverse correlation using heteronuclear zero and double quantum
;      coherence
;
;      F1(HN) -> F3(N, HMQC, t1) -> F1(Ha + HN, t2) ->  F1(HN, t3)
;
;for determination of 3J H(N)Ha (Phi) using quantitative J
;phase sensitive (t1)
;phase sensitive (t2)
;using f3 - channel
;(use parameterset HNHAGP3D)
;
;G.W. Vuister & A. Bax, J. Am. Chem. Soc. 115, 7772-7777 (1993)
;G.W. Vuister & A. Bax, J. Biomol NMR 4, 193-200 (1994)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"


"d23=13.05m"			;zeta
"d24=4.5m"			;delta


"d0=d24/2-p2/2-(p22-p21)/2"
"d10=3u"

"in0=inf1/4"
"in10=inf2/2"

"in20=in0"


#   ifdef LABEL_CN
"d20=d23-d24/2-p16-d16-p21/2-p22/2-larger(p8,p22)/2-d10-4u"
#   else
"d20=d23-d24/2-p16-d16-p21/2-p22-d10-4u"
#   endif /*LABEL_CN*/


"DELTA1=d24-p16-d16"
"DELTA2=d23-d24-p21-p16-d16-4u"
"DELTA3=d23-p16-d16-4u"

#   ifdef LABEL_CN
"TAU=larger(p8,p22)+d10*2"
#   else
"TAU=p22+d10*2"
#   endif /*LABEL_CN*/


aqseq 312


1 ze
  d11 pl16:f3
2 d11 do:f3
3 d12
  d1
  50u UNBLKGRAD

  (p1 ph2)
  p16:gp1
  d16
  DELTA1 pl3:f3
  (p21 ph7):f3
  4u
  p16:gp2
  d16
  DELTA2
  (p2 ph3)
  (DELTA3) (d0 p22 ph1):f3
  4u
  p16:gp3
  d16
  (p1 ph4)
  d10

#   ifdef LABEL_CN
  (center (p8:sp13 ph1):f2 (p22 ph8):f3 )
#   else
  (p22 ph8):f3
#   endif /*LABEL_CN*/

  d10
  p2 ph1
  TAU
  (p1 ph5)
  4u
  p16:gp3
  d16
  (DELTA3 p2 ph6 DELTA2) (d20 p22 ph1):f3
  4u
  p16:gp2
  d16
  (p21 ph1):f3
  DELTA1
  p16:gp1
  d16
  (p1 ph9)

  4u
  p16:gp4
  d16 pl0:f1
  (p11:sp1 ph10:r):f1
  4u
  4u pl1:f1
  (p2 ph1)
  4u pl0:f1
  (p11:sp1 ph10:r):f1
  4u
  p16:gp4
  d16 pl1:f1 pl16:f3
  4u BLKGRAD

  go=2 ph31 cpd3:f3

  d11 do:f3 mc #0 to 2
     F1PH(calph(ph7, +90), caldel(d0, +in0) & caldel(d20, +in20))
     F2PH(calph(ph2, +90) & calph(ph3, +90) & calph(ph4, +90), caldel(d10, +in10))
exit
   

ph1=0 
ph2=0
ph3=0 0 0 0 2 2 2 2
ph4=0 2
ph5=0 0 2 2
ph6=0 0 0 0 2 2 2 2
ph7=0
ph8=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
ph9=1 3
ph10=2
ph31=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1 : f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (F1 in 3D) = d24/2-p2/2-(p22-p21)/2
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) 
;                = d20=d23-d24/2-p16-d16-p21/2-p22/2-p8/2-d10-4u
;             or = d20=d23-d24/2-p16-d16-p21/2-p22-d10-4u
;d23: 1/(4J(HNHa))                                     [13.05 msec]
;d24: 1/(2J(NH))                                       [4.5 msec]
;inf1: 1/SW(N) = 2 * DW(N)
;inf2: 1/SW(H) = 2 * DW(H)
;in0: 1/(4 * SW(N)) = (1/2) * DW(N)
;nd0: 4
;in10: 1/(2 * SW(H)) = DW(H)
;nd10: 2
;in20: = in0
;ns: 16 * n
;ds: >= 16
;td1: number of experiments in F1   td1 max = 2 * (DELTA3-d0-p22) / in0
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2 : gp 3 : gp 4
;                         30 :   45 :   75 :   20

;for z-only gradients:
;gpz1: 30%
;gpz2: 45%
;gpz3: 75%
;gpz4: 20%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
