;hnhbgp3d
;avance-version (15/02/27)
;HNHB
;3D sequence with
;   inverse correlation for triple resonance using inept transfer steps
;      and correlation via heteronuclear zero and double quantum coherence
;
;      F1(H) -> F3(N,t1), HMQC(H,t2) -> F1(H,t3)
;
;for determination of 3J NHb (Chi1) (and 3J NHa (Psi)) using quantitative J
;Ca and C=O pulses using adiabatic shaped pulse
;phase sensitive using Echo/Antiecho gradient selection (t1)
;phase sensitive (t2)
;using constant time in t1
;(use parameterset HNHBGP3D)
;
;S.J. Archer, M. Ikura, D.A. Torchia & A. Bax,
;   J. Magn. Reson. 95, 636-641 (1991)
;P.Duex, B. Whitehead, R. Boelens, R. Kaptein & G.W. Vuister,
;   J. Biomol. NMR 10, 301-306 (1997)
;F. Loehr & H. Rueterjans, J. Biomol. NMR 13, 263 - 274 (1999)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"

"d23=37.8m"
"d26=2.3m"


"d0=3u"
"d10=3u"
"d20=d23+p21*4/3.1416+d0+p2+d10*4+p8*2+p22"

"in0=inf1/2"
"in10=inf2/4"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA1=d10*4+p8*2+p22"
"DELTA2=d23-p16-d16"
"DELTA3=p16+d16+8u"


aqseq 312


1 ze
  d11 pl16:f3
2 d11 do:f3
3 d1 

  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph2) (p22 ph1):f3 )
  d26 UNBLKGRAD
  (p1 ph2) 

  4u pl0:f1
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16 pl1:f1

  (p21 ph3):f3
  d0 
  (center (p2 ph4):f1 (p8:sp13 ph1):f2 (p22 ph1):f3 )
  d20

  (p1 ph5):f1
  d10
  (p8:sp13 ph1):f2 
  d10
  (p22 ph1):f3
  d10
  (p8:sp13 ph1):f2 
  d10
  (p2 ph1)
  DELTA1
  (p1 ph6):f1

  DELTA2
  p16:gp2*EA
  d16

  (center (p1 ph1) (p21 ph7):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (center (p1 ph2) (p21 ph8):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph1)
  DELTA3
  (p2 ph1)
  4u
  p16:gp3
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 
     F1EA(calgrad(EA) & calph(ph8, +180), caldel(d0, +in0) & caldel(d20, -in20) & calph(ph3, +180) & calph(ph31, +180))
     F2PH(calph(ph5, +90), caldel(d10, +in10))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
ph5=(8) 7 7 3 3
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph7=0 0 0 0 2 2 2 2
ph8=3 3 3 3 1 1 1 1
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree  (Ca and C=O, adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse (Ca and C=O, adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d23+p21*4/3.1416+d0+p2+d10*4+p8*2+p22
;d23: constant time delay T(N)                         [37.8 msec]
;d26: 1/(4J'(NH)                                       [2.3 msec]
;inf1: 1/SW(N) = 2 * DW(N)
;inf2: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(N)) = DW(N)
;nd0: 2
;in10: 1/(4 * SW(H)) = (1/2) DW(H)
;nd10: 4
;in20: = in0
;ns: 8 * n
;ds: >= 16
;td1: number of experiments       td1 max = 2 * d20 / in20
;FnMODE: echo-antiecho in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1 : gp 2 : gp 3
;			  30 :   80 :  8.1

;for z-only gradients:
;gpz1: 30%
;gpz2: 80%
;gpz3: 8.1%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;$Id:$
