;hoesyesgpph
;avance-version (13/08/06)
;2D correlation via heteronuclear dipolar coupling
;dipolar coupling may be due to noe or chemical exchange.
;phase sensitive
;water suppression using excitation sculpting with gradients
;
;(T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d11=30m"
"d12=20u"

#   ifdef LABEL_CN
"p22=p21*2"
#   else
#   endif /*LABEL_CN*/


"in0=inf1/2"

"d0=3u"

#   ifdef LABEL_CN
"DELTA=d0*2+larger(p2,p22)"
#   else
"DELTA=d0*2+p2"
#   endif /*LABEL_CN*/

"TAU=de+p1*2/3.1416+4u"
"TAU1=d8-p16-d16-50u"


"acqt0=0"
baseopt_echo


1 ze

#   ifdef LABEL_CN
2 d11 do:f2 do:f3
3 d1 pl1:f1 pl2:f2 pl3:f3
#   else
2 d11 do:f2
3 d1 pl1:f1 pl2:f2
#   endif /*LABEL_CN*/

  (p3 ph3):f2
  d0

#   ifdef LABEL_CN
  (center (p2 ph1) (p22 ph1):f3 )
#   else
  (p2 ph1)
#   endif /*LABEL_CN*/

  d0
  (p4 ph8):f2
  DELTA
  (p3 ph1):f2             

  TAU1
  50u UNBLKGRAD
  p16:gp3
  d16

  (p1 ph1)

  p16:gp1
  d16
  (p40:sp10 ph4:r):f1
  4u
  d12 pl1:f1

  p2 ph5

  4u
  p16:gp1
  d16
  TAU
  p16:gp2
  d16
  (p40:sp10 ph6:r):f1
  4u
  d12 pl1:f1

  p2 ph7

  4u
  p16:gp2

#   ifdef LABEL_CN
  d16 pl12:f2 pl16:f3
  4u BLKGRAD

  go=2 ph31 cpd2:f2 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2
     F1PH(calph(ph3, +90), caldel(d0, +in0))
#   else
  d16 pl12:f2
  4u BLKGRAD

  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2
     F1PH(calph(ph3, +90), caldel(d0, +in0))
#   endif /*LABEL_CN*/
exit


ph1=0 
ph3=0 2 
ph4=0 0 1 1
ph5=2 2 3 3
ph6=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
ph7=2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph8=0 0 0 0 1 1 1 1
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp10: f1 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p40: f1 channel - 180 degree shaped pulse (Squa100.1000) [2 msec]
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d11: delay for disk I/O                                  [30 msec]
;d12: delay for power switching                           [20 usec]
;d16: delay for homospoil/gradient recovery
;inf1: 1/SW = 2 * DW
;in0: 1/(2 * SW) = DW
;nd0: 2
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 31%
;gpz2: 11%
;gpz3: 50%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;$Id:$
