;hoesyqfrv
;avance-version (23/03/20)
;2D heteronuclear NOE
;
;C. Yu & G. Levy, J. Am. Chem. Soc. 106, 6533 (1984)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>

define delay d8_orig


"p2=p1*2"
"d12=20u"

"d8_orig=d8"

"d0=3u"

"in0=inf1/2"


1 ze
2 d1 do:f2
  "d8=random(d8_orig,cnst8)"
3 d12 pl2:f2
  (p3 ph1):f2
  d0
  p2 ph3
  d0
  (p3 ph2):f2
  d8 pl12:f2
  p1 ph4
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 F1QF(caldel(d0, +in0))
exit


ph1=0
ph2=0 2 1 3
ph3=0 0 0 0 2 2 2 2
ph4=0 0 1 1 0 0 1 1 1 1 2 2 1 1 2 2
    2 2 3 3 2 2 3 3 3 3 0 0 3 3 0 0
ph31=0 2 2 0 0 2 2 0 1 3 3 1 1 3 3 1
     2 0 0 2 2 0 0 2 3 1 1 3 3 1 1 3


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time (cnst8 - random variation)
;d12: delay for power switching                      [20 usec]
;cnst8: random variation of mixing time d8 in %      [5 %]
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;ns: 16 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
