;hsqc1hrexf3gpphtc3d
;avance-version (21/09/15)
;3D H-1/X correlation via double inept transfer
;for measuring H-1 R(exchange) using a CPMG train
;phase sensitive
;with decoupling during acquisition
;using f3 - channel
;as pseudo3D
;with temperature compensation
;(use parameterset )
;
;T. Yuwen & L.E. Kay, J. Biomol. NMR 73, 641-650 (2019)
;(R. Ishima, & D.A. Torchia, 
;   J. Biomol. NMR 25, 243-248 (2003))
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<delay> RF_field=<$VDLIST>
define delay RF_max

define loopcounter COUNTER1
define loopcounter COUNTER2
define loopcounter COUNTER3


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d26=1s/(cnst4*4)"


"in10=inf2"

"d10=in10/2-p21*4/PI"


"DELTA1=d26-p16-d16-4u"
"DELTA5=d26-p16-d16-p27*3-d19*5-p1*2/PI"
"DELTA6=d19-p22/2"
"DELTA7=d26-p16-d16-p27*2-p0-d19*5-de-8u"


"TAU=d26-p16-4u"


"l3=td1"
"l11=0"

"d31=0"

"cnst31=0"


"spoffs13=0"
"spoffs28=0"
"spoffs29=0"


"acqt0=0"
baseopt_echo


aqseq 312


1 ze 
  d11 pl16:f3

  "RF_max=0"

9 20u
  if "RF_field > RF_max"
     {
     20u
     "RF_max=RF_field"
     }

  3m RF_field.inc
  lo to 9 times l3

  3m RF_field.res

2 d11 do:f3
3 d12
  d12 pl1:f1
  "d31=RF_field[l11]"

  20u
  "if (d31 == 0) \
     { \
     COUNTER1=0; \
     DELTA4=0; \
     } \
  else \
     { \
     COUNTER1=(d21*d31*2); \
     d31=COUNTER1/(d21*2); \
     DELTA3=(1 / (d31*4) ) - p2/3000000; \
     COUNTER3=(d21*RF_max*2); \
     DELTA4=(COUNTER3-COUNTER1)*p2; \
     }"

  if "RF_max > d31"
     {
     20u
     "cnst31=sqrt( (RF_max*RF_max) - (d31*d31) )"
     20u
     "TAU1=(1 / (cnst31*4) ) - p2/2000000"
     20u
     "COUNTER2=d21*cnst31*4"
     }
  else
     {
     "COUNTER2=0"
     }

  20u
  if "RF_max == d31"
     {
     d21*2
     }
  else
     {
8    TAU1
     (p2 ph1):f1
     TAU1
     lo to 8 times COUNTER2
     }

  (p1 ph1):f1
  p16:gp6
  d16
  (p1 ph2):f1
  p16:gp7
  d16

  d1 pl3:f3

  50u UNBLKGRAD
  (p21 ph1):f3
  p16:gp8
  d16
  (p1 ph1)
  4u
  DELTA1
  p16:gp1
  d16
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  p16:gp1
  d16
  DELTA1
  (p1 ph2)
 
  4u
  p19:gp2
  d16

#   ifdef LABEL_CN
  (center (p2 ph1) (p8:sp13 ph1):f2 (p21 ph3 d10 p21 ph4):f3 )
#   else
  (center (p2 ph1) (p21 ph3 d10 p21 ph4):f3 )
#   endif /*LABEL_CN*/

  4u
  p19:gp3
  d16 fq=cnst19(bf ppm):f1

  (p1 ph1)
6 DELTA3
  if "nsdone %2 == 0" {
    p2 ph10
  } else {
    p2 ph11
  }
  DELTA3 ipp10 ipp11 ipp20 ipp21
  lo to 6 times COUNTER1

  if "nsdone%4 < 2" {
    (p2 ph5):f1
  }
  (p43:sp29 ph5):f1
  1u
  1u pl1:f1
  (p2 ph5):f1
  (p43:sp28 ph5):f1
  1u
  1u pl1:f1
  if "nsdone%4 >= 2" {
    (p2 ph5):f1
  }

7 DELTA3 dpp10 dpp11 dpp20 dpp21
  if "nsdone %2 == 0" {
    p2 ph20
  } else {
    p2 ph21
  } 
  DELTA3 
  lo to 7 times COUNTER1
  (p1 ph1)
  DELTA4
  4u
  p19:gp4
  d16 fq=cnst18(bf ppm):f1

  (p1 ph1) 
  DELTA5
  p16:gp5
  d16 pl18:f1
  p27*0.231 ph8
  d19*2
  p27*0.692 ph8
  d19*2
  p27*1.462 ph8
  DELTA6
  (p22 ph1):f3
  DELTA6
  p27*1.462 ph9
  d19*2
  p27*0.692 ph9
  d19*2
  p0*0.231 ph9
  4u
  p16:gp5
  d16
  4u BLKGRAD
  DELTA7 pl16:f3
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2
     F1QF(calclc(l11, 1))
     F2PH(calph(ph3, +90), caldel(d10, +in10))
exit 
  

ph1=0
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=1 1 1 1 3 3 3 3 3 3 3 3 1 1 1 1
ph7=2
ph8=1
ph9=3
ph10=1 1 2 0 1 1 0 2 1 1 0 2 1 1 2 0
ph11=2 0 3 3 0 2 3 3 0 2 3 3 2 0 3 3
ph20=3 3 2 0 3 3 0 2 3 3 0 2 3 3 2 0
ph21=2 0 1 1 0 2 1 1 0 2 1 1 2 0 1 1
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl18: f1 channel - power level for 3-9-19-pulse (watergate)
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;sp28: f1 channel - shaped pulse  90 degree (Eburp2.1000)
;sp29: f1 channel - shaped pulse  90 degree (Eburp2tr.1000)
;p0 : f1 channel -  90 degree pulse at pl18
;                      use for fine adjustment
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8: f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse
;p19: gradient pulse 2
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p27: f1 channel -  90 degree pulse at pl18
;p43: f1 channel -  90 degree shaped pulse for excitation
;                      Eburp2.1000/Eburp2tr.1000 (1.7ms at 600.13 MHz)
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (3D) : in10/2-p21*4/PI
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d19: delay for binomial water suppression
;     d19 = (1/(2*d)), d = distance of next null (in Hz)
;d21: length of mixing time per CPMG block (Trelax = d21*2) [10 msec]
;d26 : 1/(4J(NH))
;cnst4: = J(NH)
;cnst18: H2O chemical shift (offset, in ppm)
;cnst19: H(N) chemical shift (offset, in ppm)
;vd : variable field strength, taken from vd-list
;inf2: 1/SW(X) = 2 * DW(X)
;in10: 1/(2 * SW(X)) = DW(X)
;nd10: 1
;ns: 2 * n
;ds: 16
;td1: number of delays in vd-list
;td2: number of experiments in F2
;FnMODE: QF(no-frequency) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 20%
;gpz2: 30%
;gpz3: -50%
;gpz4: 40%
;gpz5: 80%
;gpz6: 6%
;gpz7: 14%
;gpz8: 17%


;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.50
;gpnam3: SMSQ10.50
;gpnam4: SMSQ10.50
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam8: SMSQ10.100


;Processing

;PHC0(F2): 90
;PHC1(F2): -180
;FCOR(F2): 1


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
