;hsqc_clco_etf3gp
;avance-version (20/03/03)
;HSQC
;2D H-1/X correlation via double inept transfer
;   and Clean In-phase COSY
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;using f3 - channel
;with zero quantum suppression
;
;T. Gyoengyoesi, I. Timari, J. Haller, M.R.M. Koos, B. Luy & K.E. Koever,
;   ChemPlusChem 83, 53-60 (2018)
;Davis et al., J. Magn. Reson. 98, 207 - (1992)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d21=1s/(cnst1*4)"
"d26=1s/(cnst4*4)"


"d0=3u"

"in0=inf1/2"


"DELTA=p16+d16+p2+d0*2"
"DELTA2=d21-d26-p22/2"
"DELTA3=d26-p22/2"
"DELTA4=p16+d16++de-p1*2/PI+8u"


"acqt0=0"
baseopt_echo


1 ze
  d11 pl16:f3
2 d1 do:f3
  50u UNBLKGRAD
  20u pl3:f3

3 (p1 ph1)
  d26
  (center (p2 ph1) (p22 ph6):f3 )
  d26

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2)
  
  (p21 ph3):f3
  d0 
  (p2 ph5)
  d0
  p16:gp1*EA
  d16
  (p22 ph4):f3
  DELTA
  (p21 ph4):f3

  (p1 ph1)

  d21
  p2 ph15
  DELTA2
  (p22 ph1):f3
  DELTA3
  p1 ph15
  d21
  p2 ph16
  d21

4 d21
  p2 ph15
  d21
  p1 ph15
  d21
  p2 ph16
  d21
  lo to 4 times l8
  p1 ph17 

  10u gron0
  (p32:sp29 ph1):f1
  20u groff
  d16 
  p16:gp3
  d16 pl1:f1

  p1 ph1 
  DELTA4
  (p2 ph1)
  4u
  p16:gp2
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d1 do:f3 mc #0 to 2 
     F1EA(calgrad(EA), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph5=0 0 2 2
ph6=0
ph14=1
ph15=2
ph16=0
ph17=1 1 1 1 3 3 3 3 
ph31=0 2 0 2 2 0 2 0 2 0 2 0 0 2 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp29: f1 channel - shaped pulse (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse
;p32: f1 channel - 180 degree shaped pulse (adiabatic)      [20 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;d0 : incremented delay (2D)                                [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                                    [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(4J(HH))
;d26 : 1/(4J)YH
;cnst1: > J(HH)                                             [30 Hz]
;cnst4: = J(YH)
;l8: number of relay steps
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz0: ca. 11%
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15
;gpz3: 31%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
