;hsqcbietgpjcmqsp
;avance-version (12/01/11)
;(J-HMQC)-HSQC
;2D H-1/X correlation via double inept and 
;   heteronuclear multiple quantum transfer
;for determination of 1J CH via splitting in F1
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;using shaped pulses for inversion on f2 - channel
;using G_BIRD(r) to remove long range couplings in t1
;with J scaling in t1
;
;K.E. Koever & K. Feher, J. Magn. Reson. 168, 307-313 (2004)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d2=1s/(cnst2*2)"
"d4=1s/(cnst2*4)"
"d11=30m"


"d0=3u"
"d20=3u"

"in0=inf1/2"
"in20=in0*cnst16"


"DELTA=d0*2+p2"
"DELTA1=d4-p16-d16-larger(p2,p14)/2-de-8u"
"DELTA2=d4-larger(p2,p14)/2"
"DELTA3=d2-p16-d16-cnst17*p24/2"
"DELTA4=d4-larger(p2,p14)/2-p1*2/PI"

"TAU1=p3"
"TAU2=(p1*4/PI)-p1"
"TAU3=p1"


"acqt0=0"
baseopt_echo


1 ze
  d11 pl12:f2
2 d1 do:f2 
3 (p1 ph1)
  TAU1
  DELTA2
  4u
  (center (p2 ph2) (p14:sp3 ph1):f2 )
  4u
  DELTA2 pl2:f2 UNBLKGRAD
  
  TAU2
  (p3 ph3):f2
  TAU3
  d20 
  (p1 ph1)
  p16:gp3
  d16
  DELTA3
  (center (p2 ph1) (p24:sp7 ph1):f2 )
  DELTA3
  p16:gp3
  d16 pl2:f2
  (p1 ph1)
  d20 
  (p1 ph4)
  (p1 ph2) (p3 ph1):f2

  p16:gp4
  d16

  (p3 ph5):f2
  d0
  (p2 ph6)
  d0
  p16:gp1*EA
  d16
  (p24:sp7 ph6):f2
  p16:gp1*EA*-1
  d16
  DELTA pl2:f2
  (p3 ph6):f2

  (p1 ph1)
  DELTA4
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  p16:gp2
  d16
  DELTA1 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 
     F1EA(calgrad(EA), caldel(d0, +in0) & caldel(d20, +in20))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=2
ph6=0 0 2 2
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse 180 degree
;spnam3: Crp60,0.5,20.1 (Crp80,0.5,20.1)
;sp7: f2 channel - shaped pulse 180 degree for refocussing
;spnam7: Crp60comp.4 (Crp80comp.4)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500us for Crp60,0.5,20.1 (Crp80,0.5,20.1)
;p16: homospoil/gradient pulse
;p24: f2 channel - 180 degree shaped pulse for refocussing
;     = 2msec for Crp60comp.4 (Crp80comp.4)
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)XH
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d20: incremented delay (2D)                         [3 usec]
;cnst2: = J(XH)
;cnst16: = J(scale) factor
;cnst17: = -0.5 for Crp60comp.4 (Crp80comp.4)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;in20: = in0*cnst16
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 40.2% for C-13
;gpz3: 11%
;gpz4: 17%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100


;cnst17: Factor to compensate for coupling evolution during a pulse
;       (usually +1). A positive factor indicates that coupling
;       evolution continues during the pulse, whereas a negative
;       factor is necessary if the coupling is (partially) refocussed.



;$Id:$
