;hsqcccf3gpphwg
;avance-version (12/01/11)
;HSQC based N-15 / H-1 cross correlation
;2D H-1/X correlation via double inept transfer
;phase sensitive
;with decoupling during acquisition
;using f3 - channel
;water suppression using watergate sequence
;
;N. Tjandra, A. Szabo & A. Bax, 
;   J. Am. Chem. Soc. 118, 6986-6991 (1996)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>

  
#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d25=2.67m"
"d26=2.4m"


"d0=3u"

"in0=inf1/2"


"DELTA1=d23-p16-d16"
"DELTA2=d25+p2+d0*2"
"DELTA3=d26-p11-p16-d16-8u"


1 ze 
  d11 pl16:f3
2 d1 do:f3
3 d12 pl1:f1
  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph1) (p22 ph3):f3 )
  d26 UNBLKGRAD
  (p1 ph3) 

  p16:gp1
  d16

  (p21 ph1):f3
  p16:gp2
  d16
  DELTA1
  (p22 ph1):f3
  DELTA1
  p16:gp2
  d16

  if "cnst25 == 0"
     {
     (p1 ph1) (p21 ph4):f3
     }
  else
     {
     (p21 ph4):f3
     }

  p16:gp3
  d16

  (p21 ph5):f3
  DELTA2

  if "cnst25 == 0"
     {
     (center (p1 ph2 p1*2.4444 ph1 p1 ph2) (p22 ph6):f3 )
     }
  else
     {
     (p22 ph6):f3
     }

  d25

  d0
  (p2 ph1)
  d0
  (p21 ph1):f3

  p16:gp4
  d16

  (p1 ph1) 
  p16:gp5
  d16
  DELTA3 pl0:f1
  (p11:sp1 ph7:r):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u pl0:f1
  (p11:sp1 ph7:r):f1
  DELTA3 
  p16:gp5
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d1 do:f3 mc #0 to 2 F1PH(calph(ph5, +90), caldel(d0, +in0))
exit 
  

ph1=0
ph2=1
ph3=1 3
ph4=0 0 2 2
ph5=0
ph6=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph7=2
ph31=0 2 2 0 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d23: cross correlation delay (T2/8 < d23 < T2/2)
;d25: 1/(4J)YH                                       [2.67 msec]
;d26: 1/(4J)YH                                       [2.4 msec]
;cnst4: = J(YH)
;cnst25: = 0 for cross peak experiment
;          1 for reference experiment
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: 32
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2 : gp 3 : gp 4 : gp 5
;                         70 :   50 :   25 :   35 :   10

;for z-only gradients:
;gpz1: 70%
;gpz2: 50%
;gpz3: 25%
;gpz4: 35%
;gpz5: 10%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100



;$Id:$
