;hsqcccf3gpphwg3d.2
;avance-version (22/07/30)
;for measuring 15N(CSA)/1H-15N(dipole-dipole) cross-correlation rate
;water suppression using watergate sequence
;as pseudo3D
;(use parameterset HSQCCCF3GPPHWG3D.2)
;
; Records two spectra (td1=2) containing cross and reference signals, 
; respectively. The cross-correlation rate Rcc is obtained from the peak 
; intensitites in spectra 1 and 2 (I1,I2) according to the equation 
; I1/I2 =|tanh(Rcc*T)| with T = total cross-correlation delay d20.
; for optimal accuracy set d20 to ~ 15N T2 .
; see publication for details:
;N. Tjandra, A. Szabo & A. Bax, 
;   J. Am. Chem. Soc. 118, 6986-6991 (1996)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>

  
#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>

"td1=2"
"p2=p1*2"
"p22=p21*2"

"d11=30m"
"d12=20u"
"d25=2.67m"
"d26=2.4m"
"d0=3u"

"in0=inf2/2"
"l5=0"

"DELTA1=d26-p16-d16"
"DELTA4=d20/2-p16-d16"
"DELTA5=d25+p2+d0*2"
"DELTA9=d26-p11-p16-d16-8u"
#   ifdef LABEL_CN
"DELTA2=d20/4-p16-d16-p8/2"
"DELTA3=d20/4-p8/2"
"DELTA6=d25-p8/2+d0+p2/2"
"DELTA7=p8/2-d0-p2/2"
"DELTA8=p8/2-d0-p2/2-p21"
#   endif /*LABEL_CN*/

aqseq 312

1 ze 
  d11 pl16:f3
2 d1 do:f3
3 d12 pl1:f1 pl3:f3 UNBLKGRAD
  (p1 ph1)
  p16:gp0
  d16
  DELTA1
  (center (p2 ph1) (p22 ph3):f3 )
  DELTA1
  p16:gp0
  d16
  (p1 ph3) 

  p16:gp1
  d16

  (p21 ph1):f3
  p16:gp2
  d16

#   ifdef LABEL_CN
  DELTA2
  (p8:sp13):f2
  DELTA3
  (p22 ph1):f3
  DELTA3
  (p8:sp13):f2
  DELTA2
#   else
  DELTA4
  (p22 ph1):f3
  DELTA4
#   endif /*LABEL_CN*/

  p16:gp2
  d16

  if "l5 == 0"
     {
     (p1 ph1) (p21 ph4):f3
     }
  else
     {
     (p21 ph4):f3
     }

  p16:gp3
  d16

  (p21 ph5):f3
  DELTA5

  if "l5 == 0"
     {
     (center (p1 ph2 p1*2.4444 ph1 p1 ph2) (p22 ph6):f3 )
     }
  else
     {
     (p22 ph6):f3
     }

#   ifdef LABEL_CN
  DELTA6
  if "l5 == 0"
     {
  (refalign (DELTA7 d0 p2 ph1 d0 DELTA7):f1
   center (p8:sp13 ph1):f2
   ralign (p21 ph8 DELTA8):f3)
     }
  else
     {
  (refalign (DELTA7 d0 p2 ph1 d0 DELTA7):f1
   center (p8:sp13 ph1):f2
   ralign (p21 ph1 DELTA8):f3)
     }

#   else 
  d25
  d0
  (p2 ph1)
  d0
  if "l5 == 0"
     {
     (p21 ph8):f3
     }
  else
     {
     (p21 ph1):f3
     }
#   endif /*LABEL_CN*/

  p16:gp4
  d16

  (p1 ph1) 
  p16:gp5
  d16
  DELTA9 pl0:f1
  (p11:sp1 ph7:r):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u pl0:f1
  (p11:sp1 ph7:r):f1
  DELTA9 
  p16:gp5
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d1 do:f3 mc #0 to 2 
    F1QF(calclc(l5, 1))
    F2PH(calph(ph5, -90), caldel(d0, +in0))
exit 
  

ph1=0
ph2=1
ph3=1 3
ph4=0 0 2 2
ph5=0
ph6=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph7=2
ph8=3
ph31=0 2 2 0 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: total cross correlation delay 
;d25: 1/(4J)YH                                       [2.67 msec]
;d26: 1/(4J)YH                                       [2.4 msec]
;cnst4: = J(YH)

;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 8 * n
;ds: 32
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2 : gp 3 : gp 4 : gp 5
;                         70 :   50 :   25 :   35 :   10

;for z-only gradients:
;gpz0: 15%
;gpz1: 70%
;gpz2: 50%
;gpz3: 25%
;gpz4: 35%
;gpz5: 10%

;use gradient files:  
;gpnam0: SMSQ10.100 
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100



;$Id:$
