;hsqcedetgp_allshapes
;avance-version (20/03/03)
;HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;with multiplicity editing during selection step
;all pulses replaced with shapes for use with composite pulses @hard power
;
;W. Willker, D. Leibfritz, R. Kerssebaum & W. Bermel, Magn. Reson.
;   Chem. 31, 287-292 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"d4=1s/(cnst2*4)"
"d11=30m"


"p1 = p0/integfac51"
"p2 = 2*p0/integfac52"
"p33 = p3/integfac53"
"p34 = 2*p3/integfac54"

"spw51 = plw1"
"spw52 = plw1"
"spw53 = plw2"
"spw54 = plw2"



"d0=3u"

"in0=inf1/2"

#  ifndef CUSTOMED
"d21=2*d4"
#  endif

"DELTA1=d4-p16-8u"


"DELTA=d21-p16-d16-p2-d0*2"



1 ze
  d11 pl12:f2
2 d1 do:f2 
3 (p1:sp51 ph1)
  d4 pl2:f2
  (center (p2:sp52 ph1) (p34:sp54 ph6):f2 )
  d4 UNBLKGRAD


  (p1:sp51 ph2) (p33:sp53 ph3):f2
  
  d0 
  (p2:sp52 ph5)
  d0
  
  p16:gp1*EA
  d16
  DELTA
  (center (p2:sp52 ph1) (p34:sp54 ph4):f2 )
  d21
  (ralign (p1:sp51 ph1) (p33:sp53 ph4):f2 )
  d4
  (center (p2:sp52 ph1) (p34:sp54 ph1):f2 )
  4u
  p16:gp2
  DELTA1 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 
     F1EA(calgrad(EA), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph31=2 0 2 0 0 2 0 2
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p33 : f2 channel -  90 degree high power pulse
;p34 : f2 channel - 180 degree high power pulse
;spnam51: f1 channel - excitation shape
;spnam52: f1 channel - inversion/refocussing shape
;spnam53: f2 channel - excitation shape
;spnam54: f2 channel - inversion/refocussing shape
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                  [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: for optional custom multiplicity selection
;     defaults to 1/(2J(XH))  XH, XH3 positive, XH2 negative
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;CUSTOMED: to use custom editing delay d21 start experiment with
;          option -DCUSTOMED (eda: ZGOPTNS)
                                          ;preprocessor-flags-end




;$Id:$
