;hsqcctetgpjc
;avance-version (21/09/15)
;ct-HSQC
;2D H-1/X correlation via double inept transfer
;for determination of 1J CH using J-modulation
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;constant time version
;
;N. Tjandra & A. Bax, J. Magn. Reson. 124, 512-515 (1997)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"
"d11=30m"

"d23=14m"


"d0=3u"
"d20=d23-p14-4u"

"in0=inf1/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA1=d23-d28-p1*2-p2-p16-p14-d0-14u"
"DELTA2=d4-p16-d16-p1*2/PI-4u"
"DELTA3=d4-p16-d16-de-4u"


"spoffs3=0"
"spoffs5=bf2*(cnst21/1000000)-o2"


"acqt0=0"
baseopt_echo


1 ze 
  d11 pl12:f2 pl16:f3
2 d11 do:f2
3 d1 pl2:f2
  50u UNBLKGRAD
  (p3 ph1):f2
  p16:gp1
  d16

  (p1 ph1)
  d4
  (center (p2 ph2) (p4 ph2):f2 )
  d4
  (p1 ph3) 

  p16:gp2
  d16
  4u cpd3:f3

  (p3 ph4):f2
  4u
  (p14:sp5 ph1):f2 
  d20
  (p14:sp3 ph5):f2
  d28
  (p1 ph1 3u p2 ph2 3u p1 ph1)
  p16:gp3*EA
  DELTA1
  (p14:sp5 ph1):f2
  4u
  4u pl2:f2
  d0
  (p3 ph1):f2

  4u do:f3

  (p1 ph1) 
  4u
  p16:gp4
  d16
  DELTA2
  (center (p2 ph1) (p4 ph1):f2 )
  p16:gp5
  d16
  DELTA3 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2 
  d11 do:f2 mc #0 to 2 
     F1EA(calgrad(EA), caldel(d0, +in0) & caldel(d20, -in20) & calph(ph4, +180) & calph(ph31, +180))
exit 
  

ph1=0
ph2=1
ph3=1 1 3 3
ph4=0 2
ph5=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph31=0 2 2 0 2 0 0 2 


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp3 : f2 channel - shaped pulse 180 degree (Cali on resonance)
;sp5 : f2 channel - shaped pulse 180 degree (C=O off resonance)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay = d23-p14-4u
;d23: constant time delay T(C)                       [14 msec]
;     2T = 1/J(CC)
;d28: between 4 usec and 2.35 msec
;cnst2: = J(CH)
;cnst21: CO chemical shift (offset, in ppm)
;inf1: 1/SW(C) = 2 * DW(C)
;in0: 1/(2 * SW(C)) = DW(C)
;nd0: 2
;in20: = in0
;ns: 8 * n
;ds: 32
;td1: number of experiments       td1 max = 2 * d20 / in20
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2 : gp 3 : gp 4 : gp 5 
;                         80 :   30 :   80 :  -14 :  6.1    for C-13

;for z-only gradients:
;gpz1: 70%
;gpz2: 30%
;gpz3: 80%
;gpz4: -14.0% for C-13
;gpz5: 6.1% for C-13

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100



;$Id: $
