;hsqcctetgpjclr
;avance-version (21/09/15)
;ct-HSQC
;2D H-1/C-13 correlation via double inept transfer
;for determination of 3J C'Cb (Phi) using spin-echo difference
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;constant time version
;recording data in interleaved mode
;(use parameterset HSQCCTETGPJCLR)
;
;S. Grzesiek, G.W. Vuister & A. Bax, J. Biomol. NMR 3, 487-493 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d11=30m"

"d4=1.7m"
"d23=28.7m"


"d0=3u"
"d20=d23-p16*2-d16*2-p14-8u"

"in0=inf1/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA1=d23-d0-p14*2-p16-d16"
"DELTA2=d4-p16-d16-de+p1*2/PI-4u"

"TAU=larger(p14,p22)"


"l0=1"


"d31=d23*2-p16*2-d16*2-p14*2-8u"


"spoffs3=0"
"spoffs5=bf2*(cnst21/1000000)-o2"


"acqt0=0"
baseopt_echo


1 ze 
  d31 pl12:f2
2 d11 do:f2
3 d1 pl2:f2

  (p1 ph1)
  d4
  (center (p2 ph1) (p4 ph6):f2 )
  d4 UNBLKGRAD

#   ifdef TRIMP
  (p28 ph1)
#   endif /* TRIMP */

  (p1 ph2) 

  p16:gp3
  d16

  (p3 ph3):f2
  d0

  if "l0 %2 == 1"
     {
     (center (p2 ph5) (p14:sp5 ph5):f2 (p22 ph5):f3 )
     }
  else
     {
     (center (p2 ph5) (TAU):f2 (p22 ph5):f3 )
     }

  DELTA1

  if "l0 %2 == 1"
     {
     (TAU):f2
     }
  else
     {
     (p14:sp5 ph1):f2
     }

  p16:gp4
  d16
  (p14:sp3 ph1):f2
  p16:gp4
  d16 
  d20
  p16:gp1*-1*EA
  d16 
  (p14:sp5 ph1):f2
  4u
  4u pl2:f2 
  (p3 ph4):f2

  (p1 ph1) 
  d4
  (center (p2 ph1) (p4 ph1):f2 )
  DELTA2
  p16:gp2
  d16 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2 
  d11 do:f2 mc #0 to 2 
     F1I(iu0, 2)
     F1EA(calgrad(EA), caldel(d0, +in0) & caldel(d20, -in20) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit 
  

ph1=0
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph31=0 2 0 2 2 0 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3 : f2 channel - shaped pulse 180 degree (Cali on resonance)
;sp5 : f2 channel - shaped pulse 180 degree (C=O off resonance)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse                          [1 msec]
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)CH                                         [1.7 msec]
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay = d23-p16*2-d16*2-p14-8u
;d23: constant time delay T(C)                         [28.7 msec]
;     2T = n/1J(CC)
;d31: effective delay for J-evolution
;cnst21: CO chemical shift (offset, in ppm)
;l0: flag to switch between reference and spin-echo difference experiment
;inf1: 1/SW(C) = 2 * DW(C)
;in0: 1/(2 * SW(C)) = DW(C)
;nd0: 2
;in20: = in0
;ns: 8 * n
;ds: 32
;td1: number of experiments       td1 max = 2 * d20 / in20
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1%
;gpz3: 23%
;gpz4: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;use AU-program split [2] to split data



;$Id: $
