;hsqcctetgpsispxf2h
;avance-version (21/09/15)
;HSQC
;2D H-1/X correlation via double inept transfer
;   using sensitivity improvement
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;constant time version
;using trim pulses in inept transfer
;using shaped pulses for inversion on f2 - channel
;with H-2 decoupling
;
;(G.W. Vuister & A. Bax, J. Magn. Reson. 98, 428-435 (1992))
;(A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance, J. Magn.
;   Reson. 93, 151-170 (1991))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d2=3.85m"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"


"d0=3u"
"d20=d23-p14/2-p1-d2"

"in0=inf1/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA1=p16+d16-p1*0.78+de+8u"
"DELTA2=d4-larger(p2,p8)/2-4u"
"DELTA3=d23-d0-p14/2-larger(p14,p22)-4u"
"DELTA4=d24-p19-d16"
"DELTA5=d4-p16-d16"
"DELTA6=d2-p1-p16-d16-p14-d12-4u"


"spoffs3=0"
"spoffs5=bf2*(cnst21/1000000)-o2"
"spoffs13=0"


"acqt0=0"
baseopt_echo


1 ze 

  d11 LOCKDEC_ON
  50u LOCKH_ON
  d11 H2_PULSE
  d11 pl12:f2 pl17:f4

2 d11 do:f2 do:f4
3 d11 H2_LOCK
  6m LOCKH_OFF
  d1 pl1:f1
  50u LOCKH_ON
  d12 H2_PULSE

  (p1 ph1)
  DELTA2
  4u
  (center (p2 ph1) (p8:sp13 ph6):f2 )
  4u
  DELTA2 pl2:f2 UNBLKGRAMP
  (p1 ph9)

  p16:gp3
  d16
  4u cpd4:f4 

  (p3 ph3):f2
  d0
  (center (p2 ph7) (p14:sp5 ph1):f2 (p22 ph1):f3 )
  4u
  DELTA3
  (p14:sp3 ph4):f2
  d20
  (p1 ph1)
  (p1 ph8)
  DELTA6
  p16:gp1*EA*-1
  d16
  (p14:sp5 ph1):f2 
  4u
  d12 pl2:f2
  (p3 ph4):f2
  4u do:f4
  (p1 ph1)
  p19:gp4
  d16
  DELTA4
  (center (p2 ph1) (p4 ph1):f2 )
  DELTA4
  p19:gp4
  d16  
  (center (p1 ph2) (p3 ph5):f2 )
  p16:gp5
  d16
  DELTA5
  (center (p2 ph1) (p8:sp13 ph1):f2 )
  DELTA5
  p16:gp5
  d16
  (p1 ph1)
  DELTA1
  (p2 ph1)
  4u
  p16:gp2
  d16 pl12:f2
  4u BLKGRAMP
  go=2 ph31 cpd2:f2 cpd4:f4
  d11 do:f2 do:f4 mc #0 to 2 
     F1EA(calgrad(EA) & calph(ph5, +180), caldel(d0, +in0) & caldel(d20, -in20) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))

  d11 H2_LOCK
  d11 LOCKH_OFF
  d11 LOCKDEC_OFF

exit 
  

ph1=0
ph2=1
ph3=0 0 0 0 2 2 2 2
ph4=0 0 2 2
ph5=1 1 3 3
ph6=0
ph7=0 0 2 2
ph8=0 2
ph9=1 3
ph31=0 0 2 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl17: f4 channel - power level for CPD/BB decoupling
;sp3 : f2 channel - shaped pulse 180 degree (on resonance)
;sp5 : f2 channel - shaped pulse 180 degree (off resonance)
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse
;p19: gradient pulse 2
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)XH                                       [3.85 msec]
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d20 : decremented delay (2D): = d23-p14/2-p1-d2
;d23: d23 = T : 13.3 or 26.6 msec
;     2T (constant time period) = n/J(CC)
;d24: 1/(8J)XH for all multiplicities
;     1/(4J)XH for XH
;cnst2: = J(XH)
;cnst21: CO chemical shift (offset, in ppm)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;in20: = in0
;ns: 4 * n
;ds: 32
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd4: decoupling according to sequence defined by cpdprg4
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd4: f4 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15
;gpz3: 30%
;gpz4: 11%
;gpz5: -5%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.50
;gpnam5: SMSQ10.100



;$Id: $
