;hsqcctetgpsp.2
;avance-version (21/09/15)
;ct-HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;using constant time
;using trim pulses in inept transfer
;using shaped pulses for inversion on f2 - channel
;no refocussing, off-resonance pulse (for CO)
;(use parameterset )
;
;(G.W. Vuister & A. Bax, J. Magn. Reson. 98, 428-435 (1992))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"
"d11=30m"

#   ifdef LABEL_CN
"p22=p21*2"
#   else
#   endif /*LABEL_CN*/


"d0=3u"
"d20=d23-p16-d16"

"in0=inf1/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA1=d4-larger(p2,p8)/2-p16-de-8u"
"DELTA2=d4-larger(p2,p8)/2-4u-p16-d16"
"DELTA4=d4-larger(p2,p8)/2-p1*2/PI-4u-p16-d16"

#   ifdef LABEL_CN
"DELTA3=d23-d0-larger(p2,p22)-4u-p16-d16"
#   else
"DELTA3=d23-d0-p2-4u-p16-d16"
#   endif /*LABEL_CN*/


"spoffs13=0"


"acqt0=0"
baseopt_echo


1 ze 
  d11 pl12:f2
2 d1 do:f2
  50u UNBLKGRAD
3 (p1 ph1)
  p16:gp5
  d16
  DELTA2
  4u
  (center (p2 ph1) (p8:sp13 ph6):f2 )
  4u
  DELTA2 pl2:f2
  p16:gp5
  d16
  (p1 ph2)

  p16:gp4
  d16 

  (p3 ph3):f2
  d0

#   ifdef LABEL_CN
  (center (p2 ph1) (p22 ph1):f3 )
#   else
  (p2 ph1)
#   endif /*LABEL_CN*/

  4u
  DELTA3
  p16:gp1*EA
  d16
  (p4 ph7):f2
  p16:gp1*EA*-1
  d16
  d20
  (p3 ph4):f2

  (p1 ph1) 
  4u
  p16:gp3
  d16
  DELTA4
  (center (p2 ph1) (p8:sp13 ph1):f2 )
  4u
  p16:gp2
  DELTA1 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2 
  d1 do:f2 mc #0 to 2 
     F1EA(calgrad(EA), caldel(d0, +in0) & caldel(d20, -in20) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit 
  

ph1=0
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=0 0 2 2
ph6=0
ph7=0 0 0 0 1 1 1 1
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;spnam13: Crp60,0.5,20.1
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;     = 500usec for Crp60,0.5,20.1
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse                          [1 msec]
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(XH))
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (2D) = d23-p16-d16
;d23: d23 = T ,2T (constant time period) = n/J(CC)     [8.8 msec]
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;in20: = in0
;ns: 4 * n
;ds: 32
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 60.2% for C-13, 36.2% for N-15
;gpz3: 20%
;gpz4: 11%
;gpz5: 7%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100



                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
