;hsqcdhetgpsp
;avance-version (21/09/15)
;HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition - using f2 and f3
;using trim pulses in inept transfer
;using shaped pulses for inversion on f2 - channel
;with selective Cb/C=O decoupling
;
;E. Kupce & G. Wagner, J. Magn. Reson. B 109, 329-333 (1995)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple2>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"


"d0=3u"

"in0=inf1/2"


"DELTA=p2+d0*2+12u"
"DELTA1=d4-p16-8u"


"spoffs3=0"
"spoffs9=0"
"spoffs15=0"


1 ze
  d11 pl12:f2 pl16:f3
2 d1 do:f2 do:f3
3 d12 cpd3:f3
  (p1 ph1)
  d4 pl0:f2
  4u
  (center (p2 ph1) (p8:sp13 ph6):f2 )
  4u
  d4 pl2:f2 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) (p3 ph3):f2
  4u pl13:f2
  4u cpd8:f2
  d0 
  p2 ph5
  d0
  4u do:f2
  p16:gp1
  d16 pl0:f2
  (p24:sp9 ph4):f2
  DELTA
  p16:gp2
  d16 pl2:f2
  (ralign (p1 ph1) (p3 ph4):f2 )
  d4 pl0:f2
  (center (p2 ph1) (p8:sp13 ph1):f2 )
  4u
  p16:gp3*EA
  DELTA1 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d1 do:f2 do:f3 mc #0 to 2 
     F1EA(calgrad(EA), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph31=0 2 0 2 2 0 2 0
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl13: f2 channel - power level for Cbeta/CO decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp9: f2 channel - shaped pulse 180 degree  (on resonance, Ca)
;     sp9 requires higher selectivity - refocussing Calpha only
;sp13: f2 channel - shaped pulse 180 degree
;sp15: f2 channel - shaped pulse 180 degree for decoupling
;                                           (Cb/C=O off resonance)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion
;p16: homospoil/gradient pulse
;p24: f2 channel - 180 degree shaped pulse (Ca, selective
;p28: f1 channel - trim pulse
;p31: f2 channel - 180 degree pulse for decoupling sequence
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16, but 2 * ns * m
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;cpd8: decoupling according to sequence defined by cpdprg8 : p5m4sp180.p31
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 90%
;gpz2: 10%
;gpz3: 20.1%

;use gradient files:   
;gpnam1: SMSQ10.50
;gpnam2: SMSQ10.50
;gpnam3: SMSQ10.50


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
