;hsqcdietgpiasisp
;avance-version (20/03/03)
;HSQC-TOCSY - IPAP
;2D H-1/X correlation via double inept transfer
;   using sensitivity improvement and DIPSI2
;   for homonuclear Hartman-Hahn mixing
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition - using f2 (and f3)
;using trim pulses in inept transfer
;
;P. Nolis & T. Parella, J. Magn. Reson., 176, 15-26 (2005)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d11=30m"
"d4=1s/(cnst2*4)"

#   ifdef LABEL_CN
"p22=p21*2"
#   else
#   endif /*LABEL_CN*/


"d0=3u"

"in0=inf1/2"


"FACTOR1=(d9/(p6*115.112))/2"
"l1=FACTOR1*2"


"DELTA1=p16+d16-p1*2/PI+de+8u"
"DELTA2=d4-p14/2"

#   ifdef LABEL_CN
"DELTA=p16+d16+larger(p2,p22)+d0*2"
#   else
"DELTA=p16+d16+p2+d0*2"
#   endif /*LABEL_CN*/


"l0=0"


"acqt0=0"
baseopt_echo


1 ze

#   ifdef LABEL_CN
  d11 pl16:f3
2 d1 do:f3
  10u pl0:f2 pl3:f3
#   else
  d11
2 d1
  10u pl0:f2
#   endif /*LABEL_CN*/

3 (p1 ph1)
  DELTA2
  4u
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  4u
  DELTA2 pl2:f2 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) (p3 ph3):f2
  d0 

#   ifdef LABEL_CN
  (center (p2 ph7) (p22 ph1):f3 )
#   else
  (p2 ph7)
#   endif /*LABEL_CN*/

  d0
  p16:gp1*EA
  d16
  (p4 ph4):f2
  DELTA
  (center (p1 ph1) (p3 ph4):f2 )
  d24
  (center (p2 ph1) (p4 ph1):f2 )
  d24

  if "l0 %2 == 0"
     {
     (center (p1 ph2) (p3 ph5):f2 )
     }
  else
     {
     (center (p1 ph1) (p3 ph5):f2 )
     }

  DELTA2 pl0:f2
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  DELTA2 pl10:f1

						;begin DIPSI2
4 p6*3.556 ph22
  p6*4.556 ph24
  p6*3.222 ph22
  p6*3.167 ph24
  p6*0.333 ph22
  p6*2.722 ph24
  p6*4.167 ph22
  p6*2.944 ph24
  p6*4.111 ph22
  
  p6*3.556 ph24
  p6*4.556 ph22
  p6*3.222 ph24
  p6*3.167 ph22
  p6*0.333 ph24
  p6*2.722 ph22
  p6*4.167 ph24
  p6*2.944 ph22
  p6*4.111 ph24

  p6*3.556 ph24
  p6*4.556 ph22
  p6*3.222 ph24
  p6*3.167 ph22
  p6*0.333 ph24
  p6*2.722 ph22
  p6*4.167 ph24
  p6*2.944 ph22
  p6*4.111 ph24

  p6*3.556 ph22
  p6*4.556 ph24
  p6*3.222 ph22
  p6*3.167 ph24
  p6*0.333 ph22
  p6*2.722 ph24
  p6*4.167 ph22
  p6*2.944 ph24
  p6*4.111 ph22
  lo to 4 times l1
						;end DIPSI2

  4u pl1:f1

  if "l0 %2 == 0"
     {
     (p1 ph1)
     }
  else
     {
     (p1 ph2)
     }
  
  DELTA1
  (p2 ph1)
  4u
  p16:gp2

#   ifdef LABEL_CN
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d1 do:f3 mc #0 to 2 
#   else
  d16
  4u BLKGRAD
  go=2 ph31
  d1 mc #0 to 2 
#   endif /*LABEL_CN*/

     F1I(iu0, 2)
     F1EA(calgrad(EA) & calph(ph5, +180), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=1 1 3 3
ph6=0
ph7=0 0 2 2
ph22=3
ph24=1
ph31=0 2 2 0
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl16: f3 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p6 : f1 channel -  90 degree low power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse                         [1 msec]
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse                          [1 msec]
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(XH))
;d9 : TOCSY mixing time
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d24: 1/(8J)XH for all multiplicities
;     1/(4J)XH for XH
;cnst2: = J(XH)
;l1: loop for DIPSI cycle: ((p6*115.112) * l1) = mixing time
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 2 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;use AU-program split [ipap 2] to process data



;$Id:$
