;hsqcdietgpjcndsisp
;avance-version (12/01/11)
;HSQC-HECADE
;2D H-1/X correlation via double inept transfer
;   using sensitivity improvement and DIPSI2
;   for homonuclear Hartman-Hahn mixing
;for determination of XH long range coupling constants
;   using E.COSY
;   splitting in F1:   1J (XH)
;   splitting in F2:   nJ (XH')
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;no decoupling during acquisition
;
;W. Kozminski & D. Nanz, J. Magn. Reson. 142, 294-299 (2000)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d2=1s/(cnst2*2)"
"d4=1s/(cnst2*4)"


"d0=3u"
"d20=3u"

"in0=inf1/2"

"in20=in0*cnst16"


"FACTOR1=(d9/(p6*115.112))/2"
"l1=FACTOR1*2"


"DELTA=p16+d16+p2+d0*2-4u"
"DELTA1=p16+d16-p14+8u"
"DELTA2=d4-p14/2-4u"
"DELTA3=d24-cnst17*p24/2-4u"
"DELTA4=d20*2+p14-p1*2/PI+4u"
"DELTA5=d2-p14/2"

"TAU=p14"


"l0=1"


1 ze
2 d1
3 (p1 ph1)
  DELTA2 pl0:f2
  4u
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  4u
  DELTA2 pl2:f2 UNBLKGRAD
  (p1 ph2) 

  p16:gp3
  d16

  (p3 ph3):f2
  d0 
  (p2 ph7)
  d0
  p16:gp1*EA
  d16 pl0:f2
  (p24:sp7 ph4):f2
  4u
  DELTA pl2:f2
  (center (p1 ph1) (p3 ph4):f2 )
  DELTA3 pl0:f2
  4u
  (center (p2 ph1) (p24:sp7 ph1):f2 )
  4u
  DELTA3 pl2:f2
  (center (p1 ph2) (p3 ph5):f2 )
  DELTA2 pl0:f2
  4u
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  DELTA2
  (p1 ph1)

  4u
  d20
  (p1 ph7)
  DELTA5 pl0:f2
  (center (p2 ph7) (p14:sp3 ph1):f2 )
  DELTA5
  (p1 ph7)
  d20

  4u pl10:f1 

						;begin DIPSI2
4 p6*3.556 ph22
  p6*4.556 ph24
  p6*3.222 ph22
  p6*3.167 ph24
  p6*0.333 ph22
  p6*2.722 ph24
  p6*4.167 ph22
  p6*2.944 ph24
  p6*4.111 ph22
  
  p6*3.556 ph24
  p6*4.556 ph22
  p6*3.222 ph24
  p6*3.167 ph22
  p6*0.333 ph24
  p6*2.722 ph22
  p6*4.167 ph24
  p6*2.944 ph22
  p6*4.111 ph24

  p6*3.556 ph24
  p6*4.556 ph22
  p6*3.222 ph24
  p6*3.167 ph22
  p6*0.333 ph24
  p6*2.722 ph22
  p6*4.167 ph24
  p6*2.944 ph22
  p6*4.111 ph24

  p6*3.556 ph22
  p6*4.556 ph24
  p6*3.222 ph22
  p6*3.167 ph24
  p6*0.333 ph22
  p6*2.722 ph24
  p6*4.167 ph22
  p6*2.944 ph24
  p6*4.111 ph22
  lo to 4 times l1
						;end DIPSI2


  if "l0 %2 == 1"
     {
     TAU
     }
  else
     {
     (p14:sp3 ph1):f2
     }

  DELTA1 pl1:f1
  (p2 ph1)
  4u
  p16:gp2
  d16
  4u BLKGRAD
  go=2 ph31
  d1 mc #0 to 2 
     F1EA(calgrad(EA) & calph(ph5, +180) & calclc(l0, 1), caldel(d0, +in0) & caldel(d20, +in20) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=3 3 1 1
ph6=0
ph7=0 0 2 2
ph22=3
ph24=1
ph31=0 2 2 0
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;sp3: f2 channel - shaped pulse 180 degree
;spnam3: Crp60,0.5,20.1
;sp7: f2 channel - shaped pulse (180degree refocussing)
;spnam7: Crp60comp.4
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p6 : f1 channel -  90 degree low power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500usec for Crp60,0.5,20.1
;p16: homospoil/gradient pulse                         [1 msec]
;p24: f2 channel - 180 degree shaped pulse for refocussing
;     = 2msec for Crp60comp.4
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d4 : 1/(4J(XH))
;d9 : TOCSY mixing time
;d16: delay for homospoil/gradient recovery
;d20: incremented delay (J-evolution)                  [3 usec]
;d24: 1/(8J)XH for all multiplicities
;     1/(4J)XH for XH
;cnst2: = J(XH)
;cnst16: = J(scale) factor
;cnst17: = -0.5 for Crp60comp.4
;l1: loop for DIPSI cycle: ((p6*115.112) * l1) = mixing time
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;in20: = in0 * J(scale)
;ns: 4 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho


;use gradient ratio:	gp 1 : gp 2 : gp 3
;			  80 : 20.1 :   30   for C-13

;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13
;gpz3: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;$Id:$
