;hsqcedetf3gpsi2
;avance-version (20/03/03)
;HSQC
;2D H-1/X correlation via double inept transfer
;   using sensitivity improvement
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;with multiplicity editing during selection step
;using shaped pulses for inversion on f2 - channel
;with gradients in back-inept
;
;A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance, J. Magn.
;   Reson. 93, 151-170 (1991)
;L.E. Kay, P. Keifer & T. Saarinen, J. Am. Chem. Soc. 114,
;   10663-5 (1992)
;J. Schleucher, M. Schwendinger, M. Sattler, P. Schmidt, O. Schedletzky,
;   S.J. Glaser, O.W. Sorensen & C. Griesinger, J. Biomol. NMR 4,
;   301-306 (1994)
;W. Willker, D. Leibfritz, R. Kerssebaum & W. Bermel, Magn. Reson.
;   Chem. 31, 287-292 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d26=1s/(cnst4*4)"


"d0=3u"

"in0=inf1/2"


"DELTA1=p16+d16-p1*0.78+de+8u"
"DELTA2=d24-p19-d16"
"DELTA3=d26-p16-d16"

#   ifdef LABEL_CN
"DELTA=d21-p16-d16-larger(p2,p14)-d0*2"
#   else
"DELTA=d21-p16-d16-p2-d0*2"
#   endif /*LABEL_CN*/


"acqt0=0"
baseopt_echo


1 ze
  d11 pl16:f3
2 d1 do:f3
3 (p1 ph1)
  d26 pl3:f3
  (center (p2 ph1) (p22 ph6):f3 )
  d26 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) 

  4u
  p16:gp1
  d16

  (p21 ph3):f3
  d0 

#   ifdef LABEL_CN
  (center (p2 ph7) (p14:sp3 ph1):f2 )
#   else
  (p2 ph7)
#   endif /*LABEL_CN*/

  d0
  p16:gp2*EA
  d16
  DELTA
  (center (p2 ph1) (p22 ph4):f3 )
  d21
  (center (p1 ph1) (p21 ph4):f3 )
  p19:gp4
  d16
  DELTA2
  (center (p2 ph1) (p22 ph1):f3 )
  DELTA2
  p19:gp4
  d16
  (center (p1 ph2) (p21 ph5):f3 )
  p16:gp5
  d16
  DELTA3
  (center (p2 ph1) (p22 ph1):f3 )
  DELTA3
  p16:gp5
  d16
  (p1 ph1)
  DELTA1
  (p2 ph1)
  4u
  p16:gp3
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d1 do:f3 mc #0 to 2 
     F1EA(calgrad(EA) & calph(ph5, +180), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=1 1 3 3
ph6=0
ph7=0 0 2 2
ph31=2 0 0 2
  

;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse
;p19: gradient pulse 2                                 [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: set d21 according to multiplicity selection
;        1/(2J(YH))  YH, YH3 positive, YH2 negative
;        1/(4J(YH))  for YH2
;d24: 1/(4J)YH for YH
;     1/(8J)YH for all multiplicities
;d26: 1/(4J)YH
;cnst4: = J(YH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 80%
;gpz3: 8.1% for N-15, 20.1% for C-13
;gpz4: 5%
;gpz5: -2%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
