;hsqcedetgpsp.3_bbhd
;avance-version (20/03/03)
;reset-HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;with multiplicity editing during selection step
;using shaped pulses for inversion on f2 - channel
;for matched sweep adiabatic pulses
;using 1H broadband homodecoupling during acquisition with [BIRD]d element
;CH2 groups may be left as doubletts with 2J(HH) spliting
;
;L. Paudel, R.W. Adams, P. Kiraly, J.A. Aguilar, M. Foroozandeh,
;   M.J. Cliff, M. Nilsson, P. Sandor, J.P. Waltho & G.A. Morris,
;   Angew. Chem. 125, 11830-11833 (2013)
;(P. Sakhaii, B. Haase & W. Bermel, J. Magn. Reson. 199, 192-198 (2009))
;W. Willker, D. Leibfritz, R. Kerssebaum & W. Bermel, Magn. Reson.
;   Chem. 31, 287-292 (1993)
;C. Zwahlen, P. Legault, S.J.F. Vincent, J. Greenblatt, R. Konrat &
;   L.E. Kay, J. Am. Chem. Soc. 119 6711-6721 (1997)
;(R.D. Boyer, R. Johnson & K. Krishnamurthy, 
;   J. Magn. Reson. 165, 253-259 (2003) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>
#include <De.incl>


"p2=p1*2"
"d2=1s/(cnst2*2)"
"d4=1s/(cnst2*4)"
"d11=30m"

"p29=300u"


"d0=3u"

"in0=inf1/2"


"d62=aq/l0"
"d63=d62/2"


"l1=l0-1"


"DELTA=d21-p16-d16-p2-d0*2-p3*2/PI"
"DELTA1=d4-p16-d16-larger(p2,p14)/2-de-8u"
"DELTA2=d4-larger(p2,p14)/2"
"DELTA3=d21-p2+p3*2/PI"
"DELTA4=d4-larger(p2,p14)/2-p1*2/PI"
"DELTA5=d2-larger(p2,p39)/2"

"TAU=p39"


"acqt0=0"
baseopt_echo


1 ze
  d11 pl12:f2
2 d11 do:f2 
  4u BLKGRAD
  d1
  50u UNBLKGRAD

3 (p1 ph1)
  DELTA2
  4u
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  4u
  DELTA2 pl2:f2 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) 

  (p3 ph3):f2
  d0 
  (p2 ph5)
  d0
  p16:gp1*EA
  d16
  DELTA
  (p31:sp18 ph1):f2
  (p2 ph1)
  DELTA3
  4u
  (p31:sp18 ph1):f2
  2u
  2u pl2:f2
  (p3 ph4):f2

  (p1 ph1) 
  DELTA4
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  p16:gp2
  d16
  DELTA1 pl12:f2

  4u cpd2:f2
  ACQ_START(ph30,ph31)
  0.1u START_NEXT_SCAN

  0.1u REC_UNBLK
  0.05u DWELL_RELEASE
  d63
  0.05u DWELL_HOLD
  0.1u REC_BLK

  10u do:f2
  p29:gp3
  d16
  TAU
  (p1 ph1)
  DELTA5
  4u
  (center (p2 ph2) (p39:sp4 ph1):f2 )
  4u
  DELTA5
  (p1 ph7)
  (p39:sp4 ph1):f2
  p29:gp3
  d16 pl12:f2
  20u
  p29:gp4
  d16
  4u
  (p2 ph1)
  4u
  p29:gp4
  d16
  10u cpd2:f2

4 0.1u REC_UNBLK
  0.05u DWELL_RELEASE
  d62
  0.05u DWELL_HOLD
  0.1u REC_BLK
  
  10u do:f2
  p29:gp3
  d16
  TAU
  (p1 ph1)
  DELTA5
  4u
  (center (p2 ph2) (p39:sp4 ph1):f2 )
  4u
  DELTA5
  (p1 ph7)
  (p39:sp4 ph1):f2
  p29:gp3
  d16 pl12:f2
  20u
  p29:gp4
  d16
  4u
  (p2 ph1)
  4u
  p29:gp4
  d16
  10u cpd2:f2

  lo to 4 times l1

  0.1u REC_UNBLK
  0.05u DWELL_RELEASE
  d62*2
  0.05u DWELL_HOLD
  0.1u REC_BLK

  rcyc=2

  d11 do:f2 mc #0 to 2 
     F1EA(calgrad(EA), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph7=2
ph30=0
ph31=2 0 2 0 0 2 0 2
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse (180degree inversion)
;spnam3: Crp60,0.5,20.1 (Crp80,0.5,20.1)
;sp4: f2 channel - shaped pulse (180degree refocussing)
;spnam4: Bip720,100,10.1
;sp18: f2 channel - shaped pulse 180 degree (adiabatic matched sweep)
;spnam18: Crp60_xfilt.2
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500usec for Crp60,0.5,20.1
;p16: homospoil/gradient pulse
;p28: f1 channel - trim pulse
;p29: gradient pulse 3                                    [300 usec]
;p31: f2 channel - 180 degree shaped pulse for adiabatic matched sweep
;                      1730 us at 600.13 MHz, otherwise: 1730*sqrt(600/x)
;p39: f2 channel - 180 degree shaped pulse for refocussing
;                      Bip720,100,10.1 (160us at 600.13 MHz)
;d0 : incremented delay (2D)                  [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)XH
;d4 : 1/(4J)XH
;d11: delay for disk I/O                                  [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: set d21 according to multiplicity selection
;        1/(2J(XH))  XH, XH3 positive, XH2 negative
;d62: length of block between decoupling pulses : = aq/l0 [< 20-25 msec]
;d63: = d62/2
;cnst2: = J(XH)
;l0 : number of blocks during acquisition time
;        adjust to get d62 as required
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13
;gpz3: 3%
;gpz4: 5%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.50
;gpnam4: SMSQ10.50


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
