;hsqcedgpph
;avance-version (20/03/03)
;HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive
;with decoupling during acquisition
;peak type selection using gradient pulses with coherence selection 
;   step after t1
;with multiplicity editing during selection step
;use pulseprogram 'hsqcgpnd1d' for setup
;
;W. Willker, D. Leibfritz, R. Kerssebaum & W. Bermel, Magn. Reson.
;   Chem. 31, 287-292 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"
"d11=30m"


"d0=3u"

"in0=inf1/2"


"DELTA=d0*2+p2"
"DELTA1=d21-p16-d16-4u"
"DELTA2=d4-p16-d16-8u"


1 ze 
  d11 pl12:f2
2 d1 do:f2
3 (p1 ph1)
  d4 pl2:f2
  (center (p2 ph2) (p4 ph6):f2 )
  d4

#   ifdef TRIMP
  (p28 ph1)
#   endif /* TRIMP */

  (p1 ph3) 
  (p3 ph7):f2
  DELTA
  (p4 ph13):f2
  d0
  (p2 ph4)
  d0
  (p3 ph9):f2
  4u
  50u UNBLKGRAD
  p16:gp1
  d16
  (p3 ph10):f2
  d21
  (center (p2 ph2) (p4 ph8):f2 )
  4u
  p16:gp2
  d16
  DELTA1
 (ralign (p1 ph3) (p3 ph11):f2 )
  d4
  (center (p2 ph5) (p4 ph12):f2 )
  4u
  p16:gp3
  d16
  DELTA2 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 
     F1PH(calph(ph7, +90) & calph(ph13, +90), caldel(d0, +in0))
exit 
  

ph1=0
ph2=0 
ph3=1
ph4=0 0 2 2
ph5=0
ph6=0
ph7=1 3
ph8=0
ph9=3
ph10=0
ph11=0 0 0 0 2 2 2 2
ph12=0
ph13=0 2
ph31=0 2 0 2 2 0 2 0



;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse
;p28: f1 channel -  trim pulse                         [1 msec]
;d0 : incremented delay (2D)                  [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: set d21 according to multiplicity selection
;        1/(2J(XH))  XH, XH3 positive, XH2 negative
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence

;for z-only gradients:
;gpz1: 30%
;gpz2: 80%
;gpz3: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
