;hsqcedgpphsp_rev.2
;avance-version (21/09/15)
;HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;with multiplicity editing during selection step
;using shaped pulses for inversion on f2 - channel
;for matched sweep adiabatic pulses
;reversing chemical shift for CH2 groups
;
;P. Sakhaii & W. Bermel, J. Magn. Reson. 259, 82-86 (2015)
;(C. Zwahlen, P. Legault, S.J.F. Vincent, J. Greenblatt, R. Konrat &
;   L.E. Kay, J. Am. Chem. Soc. 119 6711-6721 (1997) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d2=1s/(cnst20*2)"
"d4=1s/(cnst2*4)"
"d11=30m"


"d0=3u"

"in0=inf1/2"


"DELTA1=d4-larger(p2,p14)/2"
"DELTA2=d2/2+p31/2"
"DELTA3=d2/2-p31/2-p19-d16"
"DELTA4=d2/2+p31/2-p19-d16"
"DELTA5=d2/2-p31/2"
"DELTA6=d2-p19-d16"

"TAU1=d0+p3*2/PI+1u"
"TAU2=d0+p2+p1*2+p3*2/PI+1u"


"spoffs18=bf2*(75.0/1000000)-o2"


#   ifdef FLAG_INV
"l0=1"
#   else
"l0=0"
#   endif /*FLAG_INV*/


"acqt0=-p1*2/PI"


1 ze
  d11 pl12:f2
2 d1 do:f2 
  50u UNBLKGRAD

  (p1 ph1)
  DELTA1
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  DELTA1

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2)
  
  p16:gp3
  d16 pl2:f2

  (p3 ph3):f2
  d0 
  (p2 ph5)
  d0

  if "l0 %2 == 0" 
     {
     (p1 ph1):f1
     DELTA2
     (p1 ph1 p2 ph2 p1 ph1):f1
     p19:gp6
     d16
     DELTA3
     (p31:sp18 ph1):f2
     TAU1
     (p1 ph2 p2 ph1 p1 ph2):f1
     TAU1
     DELTA4
     p19:gp6
     d16
     (p1 ph1 p2 ph2 p1 ph1):f1
     DELTA5
     (p31:sp18 ph1):f2
     (p1 ph1):f1
     }
  else
     {
     (p1 ph1):f1
     (p1 ph1 p2 ph2 p1 ph1):f1
     p19:gp6
     d16
     DELTA6
     (p31:sp18 ph1):f2
     TAU2
     (p1 ph2 p2 ph1 p1 ph2):f1
     TAU2
     DELTA6
     p19:gp6
     d16
     (p31:sp18 ph1):f2
     (p1 ph1 p2 ph2 p1 ph1):f1
     (p1 ph1):f1
     }

  2u pl2:f2
  (p3 ph4):f2

  p16:gp4
  d16

  (p1 ph1)
  DELTA1
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  DELTA1
  (p1 ph2)

  p16:gp5
  d16 pl12:f2
  4u BLKGRAD

  (p1 ph1)
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 
     F1PH(calph(ph3, +90) & calclc(l0, 1), caldel(d0, +in0))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph31=2 0 2 0 0 2 0 2
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse 180 degree
;spnam3: Crp60,0.5,20.1 (Crp80,0.5,20.1)
;sp18: f2 channel - shaped pulse 180 degree (adiabatic matched sweep)
;spnam18: Crp60_xfilt.2
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;p16: homospoil/gradient pulse
;p19: gradient pulse 2                                       [500 usec]
;p28: f1 channel - trim pulse
;p31: f2 channel - 180 degree shaped pulse for adiabatic matched sweep
;                      1730 us at 600.13 MHz, otherwise: 1730*sqrt(600/x)
;d0 : incremented delay (2D)                  [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)CH
;d4 : 1/(4J)CH
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(CH)                                      [145 Hz]
;cnst17: = -0.5 for Crp60comp.4
;cnst20: = J'(CH)                                    [147.4 Hz]
;inf1: 1/SW(C) = 2 * DW(C)
;in0: 1/(2 * SW(C)) = DW(C)
;nd0: 2
;ns: 2 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: States-TPPI (or TPPI)
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz3: 60%
;gpz4: 40%
;gpz5: 31%
;gpz6: 19%

;use gradient files:   
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100


;cnst17: Factor to compensate for coupling evolution during a pulse
;       (usually +1). A positive factor indicates that coupling
;       evolution continues during the pulse, whereas a negative
;       factor is necessary if the coupling is (partially) refocussed.


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;FLAG_INV: invert signal amplitude as well as frequency for CH2 goups
;             option -DFLAG_INV (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;for matched sweep use 
;   low to high field sweep, 
;   carrier shifted to center of spectrum (75 ppm) via spoffs18



;$Id: $
