;hsqcedphppsp
;avance-version (20/08/26)
;edited HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive
;using purge pulses before d1
;with decoupling during acquisition
;
;G. Bodenhausen & D.J. Ruben, Chem. Phys. Lett. 69, 185 (1980)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"
"d11=30m"


"d0=3u"

"in0=inf1/2"


"DELTA=d21-d0*2-p44-p3*2/PI"
"DELTA1=d21-p2+p3*2/PI+4u"


1 ze
  d11 pl12:f2 
2 d11 do:f2
  20u pl10:f1
  p17 ph1
  p17*2 ph3
  d1 pl1:f1 
  (p1 ph1)
  d4 pl2:f2
  (center (p2 ph2) (p4 ph9):f2 )
  d4

#   ifdef TRIMP
  (p28 ph1)
#   endif /* TRIMP */

  (p1 ph3)
  (p3 ph6):f2
  d0
  (p44:sp30 ph8)
  d0 
  
  DELTA pl1:f1
  (p31:sp18 ph1):f2
  (p2 ph1)
  DELTA1 
  (p31:sp18 ph1):f2
  2u
  2u pl2:f2
  (p3 ph7):f2

  (p1 ph4)
  d4
  (center (p2 ph2) (p4 ph5):f2 )
  d4 pl12:f2
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 
     F1PH(calph(ph6, +90) & calph(ph9, +90), caldel(d0, +in0))
exit


ph1=0
ph2=0
ph3=1
ph4=0
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=0 2
ph7=0 0 2 2
ph8=0 0 0 0 2 2 2 2
ph9=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;sp18: f2 channel - shaped pulse 180 degree (adiabatic matched sweep)
;spnam18: Crp60_xfilt.2
;sp30: f1 channel - shaped pulse 180 degree (Bip720,50,20.1)
;spnam30 : Bip720,50,20.1
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p17: f1 channel - trim pulse (pl10)                   [2.5 msec]
;p28: f1 channel - trim pulse (pl1)                    [1 msec]
;p31: f2 channel - 180 degree shaped pulse for adiabatic matched sweep
;                      1730 us at 600.13 MHz, otherwise: 1730*sqrt(600/x)
;p44: f1 channel - 180 degree shaped pulse for refocussing
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                               [30 msec]
;d21: set d21 according to multiplicity selection
;        1/(2J(XH))  XH, XH3 positive, XH2 negative
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
