;hsqcetf3gpro.2
;avance-version (20/03/03)
;HSQC-ROESY
;2D H-1/X correlation via double inept transfer
;with cw spinlock for ROESY mixing
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;using f3 - channel
;spinlock using 180x 180-x pulses
;
;A. Bax & D.G. Davis, J. Magn. Reson 63, 207-213 (1985)
;T.-L. Hwang & A.J. Shaka, J. Am. Chem. Soc. 114, 3157-3159 (1992)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d26=1s/(cnst4*4)"


"d0=3u"

"in0=inf1/2"


"DELTA1=p16+d16+8u"

#   ifdef LABEL_CN
"DELTA=p16+d16+larger(p2,p14)+d0*2"
#   else
"DELTA=p16+d16+p2+d0*2"
#   endif /*LABEL_CN*/


"l4=p15/(p25*2)"


1 ze

#   ifdef LABEL_CN
  d11 pl12:f2 pl16:f3
2 d1 do:f2 do:f3
  10u pl2:f2 pl3:f3
#   else
  d11 pl16:f3
2 d1 do:f3
  10u pl3:f3
#   endif /*LABEL_CN*/

3 d12 pl1:f1
  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph1) (p22 ph6):f3 )
  d26 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) 
  3u
  p16:gp1
  d16
  (p21 ph3):f3
  d0 

#   ifdef LABEL_CN
  (center (p2 ph5) (p14:sp3 ph1):f2 )
#   else
  (p2 ph5)
#   endif /*LABEL_CN*/

  d0
  p16:gp2*EA
  d16
  (p22 ph4):f3
  DELTA
  (ralign (p1 ph1) (p21 ph4):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26 pl27:f1
4 (p25 ph2)
  (p25 ph7)
  lo to 4 times l4
  DELTA1 pl1:f1
  (p2 ph2)
  4u
  p16:gp3

#   ifdef LABEL_CN
  d16 pl12:f2 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd2:f2 cpd3:f3
  d1 do:f2 do:f3 mc #0 to 2 
#   else
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d1 do:f3 mc #0 to 2 
#   endif /*LABEL_CN*/

     F1EA(calgrad(EA), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph7=3
ph31=0 2 0 2 2 0 2 0
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;pl27: f1 channel - power level for pulsed ROESY-spinlock
;sp3: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p15: f1 channel - pulse for ROESY spinlock
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p25: f1 channel - 180 degree pulse at pl27
;p28: f1 channel - trim pulse in inept transfer      [1 msec]
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d26 : 1/(4J)YH
;cnst4: = J(YH)
;l4: loop for spinlock = p15 / p25*2
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 80%
;gpz3: 20.1% for C-13, 8.1% for N-15

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
