;hsqcetgpiajclrndsp_bshd
;avance-version (21/09/15)
;IPAP-HSQMBC
;2D H-1/X correlation via double inept transfer
;for determination of XH long range coupling constants
;   via splitting in F2
;   with selective proton pulses
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;no decoupling during acquisition
;with bandselective homodecoupling
;
;L. Castanar, J. Sauri, P. Nolis A. Virgili & T. Parella,
;   J. Magn. Reson. 238, 63-69 (2014)
;L. Castanar, P. Nolis A. Virgili & T. Parella,
;   Chem. Eur. J. 19, 17283-17286 (2013)
;J. Ying, J. Roche & A. Bax, J. Magn. Reson. 241, 97-102 (2014)
;S. Gil, J.F. Espinosa & T. Parella,
;   J. Magn. Reson. 213, 145-150 (2011)
;(B.L. Marquez, W.H. Gerwick & R.T. Williamson, Magn. Reson. 
;   Chem. 39, 499-530 (2001) )
;(R.T. Williamson, B.L. Marquez, W.H. Gerwick & K.E. Kover,
;   Magn. Reson. Chem. 38, 265-273 (2000) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>
#include <De.incl>


"p2=p1*2"
"d6=1s/(cnst13*4)"
"d11=30m"

"p29=300u"


"d0=3u"

"in0=inf1/2"


"d62=aq/(l0*2)"
"d63=d62/2"


"DELTA=p16+d16+p2+d0*2-4u"
"DELTA1=p16+d16+de-p1*2/PI+4u"
"DELTA2=d6-p16-d16-larger(p14,p46)/2"

"TAU=p14"


"l10=0"


#   ifdef CALC_SPOFFS
"spoffs35=bf1*(cnst21/1000000)-o1"
#   else
#   endif /*CALC_SPOFFS*/


"acqt0=0"
baseopt_echo


1 ze
2 d11
  4u BLKGRAD
  d1 pl1:f1
  50u UNBLKGRAD

  (p1 ph1)
  p16:gp3
  d16
  DELTA2
  (center (p46:sp35 ph1) (p14:sp3 ph6):f2 )
  DELTA2
  p16:gp3
  d16 pl1:f1 pl2:f2
  (p1 ph2) 

  p16:gp4
  d16
  
  (p3 ph3):f2
  d0 
  p2 ph5
  d0
  p16:gp1*EA
  d16
  (p24:sp7 ph4):f2
  4u
  DELTA pl2:f2
  (p3 ph4):f2

  p16:gp5
  d16

  if "l10 %2 == 0"
     {
     (p1 ph2)
     p16:gp6
     d16
     DELTA2
     (center (p46:sp35 ph1) (p14:sp3 ph1):f2 )
     }
  else
     {
     (p1 ph1)
     p16:gp6
     d16
     DELTA2
     (center (p46:sp35 ph1) (TAU):f2 )
     }


  DELTA2
  p16:gp6
  d16 pl1:f1 pl2:f2
  (p1 ph2) 
  DELTA1
  (p2 ph1)
  p16:gp2
  d16
  
  ACQ_START(ph30,ph31)
  0.1u START_NEXT_SCAN

  0.1u REC_UNBLK
  0.05u DWELL_RELEASE
  d63
  0.05u DWELL_HOLD
  0.1u REC_BLK
   
4 p29:gp7
  d16 pl1:f1
  (p2 ph1):f1
  p29:gp7
  d16 

  p29:gp8
  d16
  5u
  (p46:sp35 ph7):f1
  5u
  p29:gp8
  d16

  0.1u REC_UNBLK
  0.05u DWELL_RELEASE
  d62
  0.05u DWELL_HOLD
  0.1u REC_BLK

  p29:gp7
  d16 pl1:f1
  (p2 ph1):f1
  p29:gp7
  d16 
 
  p29:gp8
  d16
  5u
  (p46:sp35 ph7):f1
  5u
  p29:gp8
  d16

  0.1u REC_UNBLK
  0.05u DWELL_RELEASE
  d62
  0.05u DWELL_HOLD
  0.1u REC_BLK

  lo to 4 times l0

  d62

  rcyc=2

  d11 mc #0 to 2 
     F1I(iu10, 2)
     F1EA(calgrad(EA), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph7=2
ph30=0
ph31=0 2 0 2 2 0 2 0
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;sp3: f2 channel - shaped pulse (180degree inversion)
;spnam3: Crp60,0.5,20.1 (Crp80,0.5,20.1)
;sp7: f2 channel - shaped pulse (180degree refocussing)
;spnam7: Crp60comp.4 (Crp80comp.4)
;sp35: f1 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500usec for Crp60,0.5,20.1
;p16: homospoil/gradient pulse
;p24: f2 channel - 180 degree shaped pulse for refocussing
;     = 2msec for Crp60comp.4
;p29: gradient pulse 3                                    [300 usec]
;p46: f1 channel - 180 degree shaped pulse                [20-80ms]
;d0 : incremented delay (2D)                              [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d6 : delay for evolution of long range couplings (1/2Jlr)
;d11: delay for disk I/O                                  [30 msec]
;d16: delay for homospoil/gradient recovery
;d62: length of block between decoupling pulses : = aq/l0 [< 20-25 msec]
;d63: = d62/2
;cnst2: = J(XH)
;cnst13: = J(XH) long range
;cnst21: chemical shift for selective pulse (offset, in ppm)
;l0 : number of blocks during acquisition time
;        adjust to get d62 as required
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 8 * n
;ds: 32
;td1: number of experiments
;FnMODE: echo-antiecho


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13
;gpz3: 11%
;gpz4: 31%
;gpz5: 17%
;gpz6: 5%
;gpz7: 7%
;gpz8: 5%


;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.50
;gpnam8: SMSQ10.50



;$Id: $
