;hsqcetgpiajcsp.2
;avance-version (20/03/03)
;CLIP/CLAP HSQC
;2D H-1/X correlation via double inept transfer
;for determination of 1J CH via splitting in F2
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;no decoupling during acquisition
;using trim pulses in inept transfer
;using shaped pulses for inversion and refocussing on f2 - channel
;
;A. Enthart, J.C. Freudenberger, J. Furrer, H. Kessler & B. Luy
;   J. Magn. Reson. 192, 314-22 (2008)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d4=1s/(cnst2*4)"

#   ifdef LABEL_CN
"p22=p21*2"
#   else
#   endif /*LABEL_CN*/


"d0=3u"

"in0=inf1/2"


"DELTA1=d4-larger(p2,p14)/2-4u"
"DELTA2=d4-larger(p2,p14)/2-p1*2/PI"
"DELTA3=d4-p16-d16-larger(p2,p14)/2-p3-de-8u"
"DELTA4=d4-p16-d16-larger(p2,p14)/2-de-8u"

#   ifdef LABEL_CN
"DELTA=p16+d16+larger(p2,p22)+d0*2"
#   else
"DELTA=p16+d16+p2+d0*2"
#   endif /*LABEL_CN*/


"TAU=p14"


"l0=0"


"acqt0=0"
baseopt_echo


1 ze
2 d1
3 (p1 ph1)
  DELTA1
  4u
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  4u
  DELTA1 pl2:f2 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2)

  (p3 ph3):f2
  d0 

#   ifdef LABEL_CN
  (center (p2 ph5) (p22 ph1):f3 )
#   else
  (p2 ph5)
#   endif /*LABEL_CN*/

  d0
  p16:gp1*EA
  d16
  4u
  (p24:sp7 ph4):f2
  4u
  DELTA pl2:f2
  (p3 ph4):f2

  if "l0 %2 == 0"
     {
     (p1 ph1)
     DELTA2
     (center (p2 ph1) (p14:sp3 ph1):f2 )
     4u
     p16:gp2
     d16
     DELTA3 pl2:f2
     4u BLKGRAD
     (p3 ph7):f2
     }
  else
     {
     (p1 ph2)
     DELTA2
     (center (p2 ph1) (TAU):f2 )
     4u
     p16:gp2
     d16
     DELTA4 pl2:f2
     4u BLKGRAD
     }

  go=2 ph31
  d1 mc #0 to 2 
     F1I(iu0, 2)
     F1EA(calgrad(EA), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph7=0
ph31=0 2 0 2 2 0 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;sp3: f2 channel - shaped pulse 180 degree for inversion
;sp7: f2 channel - shaped pulse 180 degree for refocussing
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;p16: homospoil/gradient pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse for refocussing
;p28: f1 channel - trim pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;use AU-program split [ipap 2] to process data



;$Id:$
