;hsqcetgpiasp
;avance-version (12/01/11)
;HSQC - IPAP
;2D H-1/X correlation via double inept transfer
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using shaped pulses for inversion on f2 - channel
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d24=1s/(cnst2*cnst11)"


"d0=3u"

"in0=inf1/2"


"DELTA=p16+d16+p22+d0*2-p3*4/3.1316"
"DELTA1=d4-p16-larger(p2,p8)/2-8u"
"DELTA2=d4-larger(p2,p8)/2"
"DELTA3=d24-p19-d16"
"DELTA4=d24-p19-d16-p1"


"l0=1"


1 ze
  d11 pl12:f2
2 d1 do:f2 
3 (p1 ph1)
  DELTA2 pl0:f2
  4u
  (center (p2 ph1) (p8:sp13 ph7):f2 )
  4u
  DELTA2 pl2:f2 UNBLKGRAD
  (p1 ph2) 

  p16:gp3
  d16

if "l0 %2 == 1"
     {
     (p2 ph1)
     (p3 ph3):f2
     p19:gp4
     d16
     DELTA3
     (p4 ph5):f2
     DELTA3
     p19:gp4
     d16
     }
  else
     {
     (p3 ph4):f2
     p19:gp4
     d16
     DELTA3
     (center (p2 ph1) (p4 ph5):f2 )
     DELTA4
     p19:gp4
     d16
     (p1 ph6)
     }

  d0 
  (p22 ph1):f3
  d0
  p16:gp1*EA
  d16
  (p4 ph1):f2
  DELTA
  (p3 ph1):f2

  (p1 ph1) 
  DELTA2 pl0:f2
  (center (p2 ph1) (p8:sp13 ph1):f2 )
  4u
  p16:gp2
  DELTA1 pl12:f2
  4u BLKGRAD
  
  if "l0 %2 == 1"
     {
     go=2 ph30 cpd2:f2
     }
  else
     {
     go=2 ph31 cpd2:f2
     }
  
  d1 do:f2 mc #0 to 2 
     F1I(iu0, 2)
     F1EA(calgrad(EA), caldel(d0, +in0) & calph(ph3, +180) & calph(ph4, +180) & calph(ph7, +180) & calph(ph30, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=3 1
ph3=0 0 2 2
ph4=3 3 1 1
ph5=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph7=0
ph30=0 2 2 0
ph31=0 2 2 0 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse
;p19: gradient pulse 2                               [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)CH
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d24: 1/(4J)CH for CH
;     1/(8J)CH for all multiplicities
;cnst2: = J(CH)
;cnst11: for multiplicity selection = 4 for CH, 
;                                     8 for all multiplicities
;inf1: 1/SW(C) = 2 * DW(C)
;in0: 1/(2 * SW(C)) = DW(C)
;nd0: 2
;ns: 4 * n
;ds: >= 32
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1 : gp 2 : gp 3 : gp 4
;			  80 : 20.1 :   50 :    5

;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1%
;gpz3: 50%
;gpz4: 5%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100


;use AU-program split [ipap 2] to split data



;$Id:$
