;hsqcetgplrjcsp
;avance-version (13/01/23)
;EXSIDE
;2D H-1/X correlation via double inept transfer
;for determination of XH long range coupling constants
;   via splitting in F1
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;using selective pulses for H-1
;with decoupling during acquisition
;
;V.V. Krishnamurthy, J. Magn. Reson., Series A 121, 33-41 (1996) 
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d2=1s/(cnst2*2)"
"d11=30m"


"d0=3u"
"d20=d6/4-p16-d16-4u-larger(p12,p14)/2"

"in0=inf1/2"

"in20=0.5*in0*cnst16"


"DELTA=p16+d16+p2+d0*2-4u"
"DELTA1=d6/4-p16*2-d16*2-4u-larger(p12,p14)/2"
"DELTA2=d6/4-p16-d16-4u-larger(p12,p14)/2"
"DELTA3=d2-larger(p2,p14)/2"


1 ze
  d11 pl12:f2
2 d1 do:f2 
3 (p1*1.5 ph1)
  DELTA3
  (center (p2 ph8) (p14:sp3 ph1):f2 )
  DELTA3 UNBLKGRAD
  (p1*0.5 ph1)
  4u
  p16:gp3
  d16

  (p1 ph1)

  d20
  4u
  p16:gp4
  d16
  (center (p12:sp2 ph1) (p14:sp3 ph7):f2 )
  4u
  p16:gp4
  d16
  d20

  d20
  4u
  p16:gp5
  d16
  (center (p12:sp2 ph3) (p14:sp3 ph7):f2 )
  4u
  p16:gp5
  d16 pl1:f1
  d20

  (p1 ph2) 

  4u
  p16:gp6
  d16 pl2:f2

  (p3 ph4):f2
  d0 
  p2 ph6
  d0
  p16:gp1*EA
  d16
  (p24:sp7 ph5):f2
  4u
  DELTA pl2:f2
  (ralign (p1 ph1) (p3 ph5):f2 )

  4u
  p16:gp2
  d16
  DELTA1
  p16:gp4
  d16
  (center (p12:sp2 ph1) (p14:sp3 ph1):f2 )
  4u
  p16:gp4
  d16
  DELTA2

  DELTA2
  4u
  p16:gp5
  d16
  (center (p12:sp2 ph3) (p14:sp3 ph1):f2 )
  4u
  p16:gp5
  d16 pl1:f1 pl12:f2
  DELTA2 BLKGRAD
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 
     F1EA(calgrad(EA), caldel(d0, +in0) & caldel(d20, +in20) & calph(ph4, +180) & calph(ph7, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=2
ph4=0 2
ph5=0 0 0 0 2 2 2 2
ph6=0 0 2 2
ph7=0
ph8=2
ph31=0 2 0 2 2 0 2 0
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp2: f1 channel - shaped pulse 180 degree
;sp3: f2 channel - shaped pulse (180degree inversion)
;spnam3: Crp60,0.5,20.1
;sp7: f2 channel - shaped pulse (180degree refocussing)
;spnam7: Crp60comp.4
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse (selective)
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500usec for Crp60,0.5,20.1
;p16: homospoil/gradient pulse
;p24: f2 channel - 180 degree shaped pulse for refocussing
;     = 2msec for Crp60comp.4
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)XH
;d6 : delay for evolution of long range couplings (1/2Jlr)
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d20: incremented delay (J-evolution)
;cnst2: = J(XH)
;cnst16: = J(scale) factor
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;in20: = in0 * J(scale)
;ns: 4 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1 : gp 2 : gp 3 : gp 4 : gp 5 : gp 6
;			  80 : 20.1 :   20 :    7 :   11 :   50   for C-13

;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13
;gpz3: 20%
;gpz4: 7%
;gpz5: 11%
;gpz6: 50%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100



;$Id:$
