;hsqcetgpml
;avance-version (20/03/03)
;HSQC-TOCSY
;2D H-1/X correlation via double inept transfer
;   using MLEV17 for homonuclear Hartman-Hahn mixing
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p5=p6*.667"
"p7=p6*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"

#   ifdef LABEL_CN
"p22=p21*2"
#   else
#   endif /*LABEL_CN*/


"d0=3u"

"in0=inf1/2"


"SCALEF=p7*2/p5"
"FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF"
"l1=FACTOR1*SCALEF"


"DELTA1=p16+d16+8u"

#   ifdef LABEL_CN
"DELTA=p16+d16+larger(p2,p22)+d0*2"
#   else
"DELTA=p16+d16+p2+d0*2"
#   endif /*LABEL_CN*/


1 ze

#   ifdef LABEL_CN
  d11 pl12:f2 pl16:f3
2 d1 do:f2 do:f3
  10u pl2:f2 pl3:f3
#   else
  d11 pl12:f2
2 d1 do:f2 
  10u pl2:f2
#   endif /*LABEL_CN*/

3 d12 pl1:f1
  (p1 ph1)
  d4
  (center (p2 ph1) (p4 ph6):f2 )
  d4 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) (p3 ph3):f2
  d0 

#   ifdef LABEL_CN
  (center (p2 ph5) (p22 ph1):f3 )
#   else
  (p2 ph5)
#   endif /*LABEL_CN*/

  d0
  p16:gp1*EA
  d16
  (p4 ph4):f2
  DELTA
  (ralign (p1 ph1) (p3 ph4):f2 )
  d4
  (center (p2 ph1) (p4 ph1):f2 )
  d4 pl10:f1
  (p17 ph26)
						;begin MLEV17
4 (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p5 ph23)
  lo to 4 times l1
						;end MLEV17
  (p17 ph26)
  DELTA1 pl1:f1
  (p2 ph2)
  4u
  p16:gp2

#   ifdef LABEL_CN
  d16 pl12:f2 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd2:f2 cpd3:f3
  d1 do:f2 do:f3 mc #0 to 2 
#   else
  d16 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 
#   endif /*LABEL_CN*/

     F1EA(calgrad(EA), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph22=3
ph23=0
ph24=1
ph25=2
ph26=0
ph31=0 2 0 2 2 0 2 0
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p5 : f1 channel -  60 degree low power pulse
;p6 : f1 channel -  90 degree low power pulse
;p7 : f1 channel - 180 degree low power pulse
;p16: homospoil/gradient pulse
;p17: f1 channel - trim pulse in spinlock part       [2.5 msec]
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse in inept transfer      [1 msec]
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d9 : TOCSY mixing time
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;l1: loop for MLEV cycle: (((p6*64) + p5) * l1) + (p17*2) = mixing time
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
