;hsqcetgpsismsp
;avance-version (21/09/15)
;simultaneous HSQC
;2D H-1/X correlation via double inept transfer
;   using sensitivity improvement
;   simultaneous evolution of C-13 and N-15 chemical shift in t1
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;using shaped pulses for inversion on f2 - channel
;(use parameterset )
;
;(M. Sattler, M. Maurer, J. Schleucher & C. Griesinger, 
;   J. Biomol. NMR 5, 97-102 (1995) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"
"d26=1s/(cnst4*4)"


"d24=d4/2"


"d0=3u"
"d28=3u"

"in0=inf1/2"

"in28=in20/2-in0"


"DELTA=d4-p8/2"
"DELTA1=d26-d4-p8/2"
"DELTA2=p16+d16+d28*2+p2+p3*2+p4+d0*4+p2*2+p1*6+16u"
"DELTA3=p16+d16+d0*2+p2+p1*2+6u"
"DELTA4=d4/2+p21+p1-p2-p22-p19-d16"
"DELTA5=d26-d4/2-p2-p22+p3-p4-(p21*0.27)"
"DELTA6=(p21*0.27)-(p1*0.27)"
"DELTA7=d26-d4/2"
"DELTA8=p16+d16+8u"
"DELTA9=d24-p19-d16"
"DELTA10=d4-p8/2-p19-d16"
"DELTA11=d26-p19-d16"


"spoffs13=0"


1 ze
  d11 pl12:f2 pl16:f3
2 d1 do:f2 do:f3
3 d12 pl2:f2 pl3:f3

  (p1 ph1)
  DELTA 
  (p8:sp13 ph6):f2
  DELTA1
  (center (p2 ph1) (p22 ph7):f3 )
  d26 UNBLKGRAD

#   ifdef TRIMP
  (p28 ph1)
#   endif /* TRIMP */

  (p1 ph2) 

  4u
  p16:gp1
  d16 pl2:f2 

  (p21 ph8):f3 
  4u
  p16:gp2*EA
  d16
  DELTA2
  (p22 ph8):f3
  d28
  (p1 ph2 3u p2 ph1 3u p1 ph2)
  d28
  (p3 ph3):f2
  d0 
  (p1 ph1 3u p2 ph2 3u p1 ph1) 
  d0
  p16:gp3*EA
  d16
  (p4 ph4):f2
  DELTA3
  (p3 ph4):f2 
  (p21 ph10):f3

  (p1 ph1) 
  p19:gp5
  d16
  DELTA9
  (p4 ph1):f2
  (p2 ph1) 
  (p22 ph1):f3
  DELTA4
  p19:gp5
  d16
  (p3 ph5):f2
  DELTA7
  (p2 ph1) 
  (p22 ph1):f3
  DELTA5
  (p21 ph11):f3
  DELTA6
  (p1 ph2) 
  p19:gp6
  d16
  DELTA10
  (p8:sp13 ph1):f2
  DELTA1
  (center (p2 ph1) (p22 ph1):f3 )
  DELTA11
  p19:gp6
  d16
  (p1 ph1)
  DELTA8
  (p1 ph2 3u p2 ph1 3u p1 ph2)
  4u
  p16:gp4
  d16 pl12:f2 pl16:f3
  4u BLKGRAD

  go=2 ph31 cpd2:f2 cpd3:f3
  d1 do:f2 do:f3 mc #0 to 2 
     F1EA(calgrad(EA) & calph(ph5, +180) & calph(ph11, +180), caldel(d0, +in0) & caldel(d28, +in28) & calph(ph3, +180) & calph(ph6, +180) & calph(ph7, +180) & calph(ph8, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=3 3 1 1
ph6=0
ph7=0
ph8=2 0
ph10=0 0 2 2
ph11=1 1 3 3 
ph31=0 2 2 0
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse
;p19: gradient pulse 2                                 [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse                          [1 msec]
;d0 : incremented delay                                [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CH))
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d24: = d4 / 2
;d26: 1/(4J(NH))
;d28: incremented delay                                [3 usec]
;cnst2: = J(CH)
;cnst4: = J(NH)
;inf1: 1/SW(C) = 2 * DW(C)
;in0: 1/(2 * SW(C)) = DW(C)
;nd0: 2
;in20: 1/SW(N) = 2 * DW(N)
;in28: in20/2 - in0
;ns: 4 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: -47.63%
;gpz3: 32.37%
;gpz4: 8.14%
;gpz5: 11%
;gpz6: -5%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
