;hsqcetgpsiwt
;avance-version (20/03/03)
;HSQC
;2D H-1/X correlation via double inept transfer
;   using sensitivity improvement
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;WET solvent suppression with shape pulse
;
;A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance, J. Magn.
;   Reson. 93, 151-170 (1991)
;L.E. Kay, P. Keifer & T. Saarinen, J. Am. Chem. Soc. 114,
;   10663-5 (1992)
;J. Schleucher, M. Schwendinger, M. Sattler, P. Schmidt, O. Schedletzky,
;   S.J. Glaser, O.W. Sorensen & C. Griesinger, J. Biomol. NMR 4,
;   301-306 (1994)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<lcnmr>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"

#   ifdef LABEL_CN
"p22=p21*2"
#   else
#   endif /*LABEL_CN*/


"d0=3u"

"in0=inf1/2"


"DELTA1=p16+d16-p1*0.78+de+8u"

#   ifdef LABEL_CN
"DELTA=p16+d16+larger(p2,p22)+d0*2"
#   else
"DELTA=p16+d16+p2+d0*2"
#   endif /*LABEL_CN*/


"acqt0=0"
baseopt_echo


1 ze
  d11 pl12:f2
2 d11 do:f2
3 d1 BLKGRAD
  50u UNBLKGRAD

  d12 pl0:f1
  4u cpd2:f2
  (p11:sp7 ph8):f1
  4u
  p16:gp21
  d16 pl0:f1
  (p11:sp8 ph9):f1
  4u
  p16:gp22
  d16 pl0:f1
  (p11:sp9 ph9):f1
  4u
  p16:gp23
  d16 pl0:f1
  (p11:sp10 ph9):f1
  4u do:f2
  p16:gp24
  d16 pl1:f1

  (p1 ph1)
  d4 pl2:f2
  (center (p2 ph1) (p4 ph6):f2 )
  d4

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) (p3 ph3):f2
  d0 

#   ifdef LABEL_CN
  (center (p2 ph7) (p22 ph1):f3 )
#   else
  (p2 ph7)
#   endif /*LABEL_CN*/

  d0
  p16:gp1*EA
  d16
  (p4 ph4):f2
  DELTA
  (center (p1 ph1) (p3 ph4):f2 )
  d24
  (center (p2 ph1) (p4 ph1):f2 )
  d24
  (center (p1 ph2) (p3 ph5):f2 )
  d4
  (center (p2 ph1) (p4 ph1):f2 )
  d4
  (p1 ph1)
  DELTA1
  (p2 ph1)
  4u
  p16:gp2
  d16 pl12:f2
  4u
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2
     F1EA(calgrad(EA) & calph(ph5, +180), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
  4u BLKGRAD
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=1 1 3 3
ph6=0
ph7=0 0 2 2
ph8=0
ph9=1
ph31=0 2 2 0
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse
;        powerlevel for 90 degree pulse
;sp7: f1 channel - shaped pulse
;sp8: f1 channel - shaped pulse
;sp9: f1 channel - shaped pulse
;sp10: f1 channel - shaped pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse                       [1 msec]
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d24: 1/(8J)XH for all multiplicities
;     1/(4J)XH for XH
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15
;gpz21: 80%
;gpz22: 40%
;gpz23: 20%
;gpz24: 10%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam21: SMSQ10.100
;gpnam22: SMSQ10.100
;gpnam23: SMSQ10.100
;gpnam24: SMSQ10.100


;use power levels               sp7        sp8        sp9        sp10
;                       sp1     +0.87      -1.04      +2.27      -5.05


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
