;hsqcf3gpnowgxy
;avance-version (19/02/08)
;HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using f3 - channel
;(use parameterset HSQCF3GPNOWGXY)
;
;L. Mueller, P. Legault & A. Pardi, 
;   J. Am. Chem. Soc. 117, 11043-11048 (1995)
;F.A.A. Mulder, C.A.E.M. Spronk, M. Slijper, R. Kaptein &
;   R. Boelens, J. Biomol. NMR 8, 223-228 (1996)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d26=1s/(cnst4*4)"


"d0=3u"

"in0=inf1/2"


"DELTA1=(d26*2/16-p22)/2"
"DELTA2=p16+d16+4u"

#   ifdef LABEL_CN
"DELTA=larger(p2,p8)+d0*2"
#   else
"DELTA=p2+d0*2"
#   endif /*LABEL_CN*/


"TAU=d8-p16-d16-p29-d12-64u"


"o1_F1=bf3*cnst29/1000000"


1 ze

#   ifdef LABEL_CN
  d11 pl12:f2 pl16:f3
2 d1 do:f2 do:f3
  10u pl2:f2 pl3:f3
#   else
  d11 pl16:f3
2 d1 do:f3
  10u pl3:f3
#   endif /*LABEL_CN*/

3 50u pl1:f1 UNBLKGRAD
  20u rpp6
  20u rpp16
  30u fq=cnst19(bf ppm):f1
  30u fq=cnst29(bf ppm):f3

  (p1 ph1)

4 DELTA1
  (center (p2 ph6) (p22 ph16):f3 )
  DELTA1 ipp6 ipp16
  lo to 4 times 16

  (p1 ph2) 

  p16:gp1
  d16

  (p21 ph3):f3
  d0 

#   ifdef LABEL_CN
  (center (p2 ph5) (p8:sp13 ph1):f2 )
#   else
  (p2 ph5)
#   endif /*LABEL_CN*/

  d0
  (p22 ph4):f3
  DELTA
  (p21 ph4):f3

  p16:gp1
  d16

  (p1 ph2)

5 DELTA1
  (center (p2 ph6) (p22 ph16):f3 )
  DELTA1 ipp6 ipp16
  lo to 5 times 16

  (p1 ph7)

  TAU
  30u fq=cnst18(bf ppm):f1
  30u fq=cnst0(bf ppm):f3
  p16:gp2
  d16 pl0:f1
  (p29:sp11 ph8:r):f1
  4u
  d12 pl1:f1

  (p1 ph1)

  p16:gp3
  d16 pl0:f1
  (p11:sp1 ph9:r):f1
  4u
  d12 pl1:f1
  (p2 ph1)
  d12 pl0:f1
  (p11:sp1 ph9:r):f1
  p16:gp3

#   ifdef LABEL_CN
  d16 pl12:f2 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd2:f2 cpd3:f3
  d1 do:f2 do:f3 mc #0 to 2
#   else
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d1 do:f3 mc #0 to 2
#   endif /*LABEL_CN*/

     F1PH(calph(ph3, +90), caldel(d0, +in0))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=1 1 3 3
ph6=0 1 0 1 1 0 1 0 2 3 2 3 3 2 3 2
ph7=2
ph8=2
ph9=2
ph16=0 1 0 1 1 0 1 0 2 3 2 3 3 2 3 2
ph31=0 2 0 2 2 0 2 0
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree
;sp11: f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p29: f1 channel -  90 degree shaped pulse
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d26: 1/(4J(YH))
;cnst0: N chemical shift (offset, in ppm)
;cnst4: = J(YH)
;cnst18: H2O chemical shift (offset, in ppm)
;cnst19: H(N) chemical shift (offset, in ppm)
;cnst29: N(H) chemical shift (offset, in ppm)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 2 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: States-TPPI (or TPPI) in F1
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1 : gp 2 : gp 3
;			  30 :   50 :   40

;for z-only gradients:
;gpz1: 30%
;gpz2: 50%
;gpz3: 40%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;for proteins set cnst0 = cnst29 to center of N(amide) region
;for rna/dna set cnst29 to center of N(amino) region and 
;   cnst0 to center of N(amino and imino) region



;$Id:$
