;hsqcf3phpr
;avance-version (20/03/03)
;HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive
;with decoupling during acquisition
;using f3 - channel
;
;G. Bodenhausen & D.J. Ruben, Chem. Phys. Lett. 69, 185 (1980)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

  
#include <Avance.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d26=1s/(cnst4*4)"


"d0=3u"

"in0=inf1/2"


"DELTA=d0*2+p2"


1 ze 
  d11 pl16:f3
2 d11 do:f3
3 d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  p1 ph1
  d26 pl3:f3
  (center (p2 ph2) (p22 ph9):f3 )
  d26

#   ifdef TRIMP
  (p28 ph1)
#   endif /* TRIMP */

  (p1 ph3) 
  (p21 ph6):f3
  d0
  (p2 ph8)
  d0
  (p22 ph7):f3
  DELTA
  (p21 ph7):f3
  (p1 ph4) 
  d26
  (center (p2 ph2) (p22 ph5):f3 )
  d26 pl16:f3
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph6, +90) & calph(ph9, +90) & calph(ph29, +90), caldel(d0, +in0))
exit 
  

ph1=0
ph2=0
ph3=1
ph4=1
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=0 2
ph7=0 0 0 0 2 2 2 2
ph8=0 0 2 2
ph9=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph29=0
ph31=0 2 0 2 2 0 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;pl16: f3 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel -  trim pulse                         [1 msec]
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d26 : 1/(4J)YH
;cnst4: = J(YH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
