;hsqcgpnd1d
;avance-version (20/03/03)
;HSQC
;1D H-1/X correlation via double inept transfer
;using gradient pulses for selection
;use as setup for pulseprogram 'hsqcgpph'
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"


"DELTA1=p16+d16"
"DELTA2=d4-p16-d16-de+p1*2/PI-8u"


"acqt0=0"
baseopt_echo


1 ze 
2 30m
  d1
  (p1 ph1)
  d4
  (center (p2 ph2) (p4 ph6):f2 )
  d4

#   ifdef TRIMP
  (p28 ph1)
#   endif /* TRIMP */

  (p1 ph3) (p3 ph7):f2
  DELTA1 UNBLKGRAD
  (p4 ph8):f2
  4u
  p16:gp1
  d16
  (p3 ph9):f2
  4u
  p16:gp2
  d16
  (p3 ph10):f2
  4u
  (p2 ph4)
  4u
  (ralign (p1 ph3) (p3 ph11):f2 )
  d4
  (center (p2 ph5) (p4 ph12):f2 )
  4u
  p16:gp3
  d16
  DELTA2
  4u BLKGRAD
  go=2 ph31
  30m mc #0 to 2 F0(zd)
exit 
  

ph1=0
ph2=0 
ph3=1
ph4=0 0 2 2
ph5=0
ph6=0
ph7=1 1 1 1 3 3 3 3
ph8=0
ph9=3
ph10=0
ph11=0 2
ph12=0
ph31=0 2 0 2 2 0 2 0



;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse
;p28: f1 channel -  trim pulse                         [1 msec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;ns: 1 * n, total number of scans: NS * TD0
;ds: 16


;for z-only gradients:
;gpz1: 80%
;gpz2: 30%
;gpz3: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
