;hsqcgpnowgx33d
;avance-version (20/03/03)
;HSQC-NOESY
;3D sequence with
;   H-1/C-13 correlation via double inept transfer
;   homonuclear correlation via dipolar coupling
;   dipolar coupling may be due to noe or chemical exchange
;   with C-13 (and N-15) filter in F3
;
;   C13 (t1) -> H[C13] (t2) -> H[C12,(N14)] (t3)
;
;phase sensitive (t1)
;phase sensitive (t2)
;no decoupling during acquisition
;with gradient pulses in mixing time
;water suppression using watergate sequence
;(use parameterset HSQCGPNOWGX33D)
;
;A.L. Breeze, Prog. NMR Spectrosc. 36, 323-372 (2000)
;C. Zwahlen, P. Legault, S.J.F. Vincent, J. Greenblatt, R. Konrat &
;   L.E. Kay, J. Am. Chem. Soc. 119 6711-6721 (1997)
;K. Ogura, H. Terasawa & F. Inagaki, J. Biomol. NMR 8, 492-498 (1996)
;J. Iwahara, J.M. Wojciak & R.T. Clubb, J. Biomol. NMR 19, 231-241 (2001)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d26=1s/(cnst4*4)"
"d28=1s/(cnst6*4)"
"d29=1s/(cnst7*4)"


"d0=3u"
"d10=3u"

"in0=inf1/2"
"in10=inf2/2"



"DELTA2=d28-p19-d16-p15/2"
"DELTA3=d26-d28-p15/2"
"DELTA4=d26-p19-d16"
"DELTA5=d29-p19-d16-p15/2"
"DELTA6=d26-d29-p15/2"
"DELTA7=d4-p8/2"

#   ifdef LABEL_CN
"DELTA=larger(p2,p22)+d0*2"
"DELTA1=larger(p8,p22)+d10*2-p8"
#   else
"DELTA=p2+d0*2"
"DELTA1=d10*2"
#   endif /*LABEL_CN*/


"TAU=d8-p16-d16"


aqseq 312


1 ze
2 d11
3 d1 pl1:f1

  (p1 ph1)
  DELTA7
  (center (p2 ph1) (p8:sp13 ph1):f2 )
  DELTA7 UNBLKGRAD

#   ifdef TRIMP
  (p28 ph1)
#   endif /* TRIMP */

  (p1 ph2)

  p16:gp7
  d16 pl1:f1 pl2:f2

  (p3 ph4):f2
  d0

#   ifdef LABEL_CN
  (center (p2 ph5) (p22 ph1):f3 )
#   else
  (p2 ph5)
#   endif /*LABEL_CN*/

  d0
  (p4 ph5):f2
  DELTA
  (p3 ph5):f2

  p16:gp8
  d16

  (p1 ph6) 
  d4
  (p8:sp13 ph1):f2
  DELTA1
  (p2 ph7)
  d4
  d10

#   ifdef LABEL_CN
  (center (p8:sp13 ph1):f2 (p22 ph1):f3 )
#   else
  (p8:sp13 ph1):f2
#   endif /*LABEL_CN*/

  d10
  (p1 ph8)
  TAU
  p16:gp1
  d16

  (p1 ph1)
  p19:gp2
  d16
  DELTA2
  (p15:sp18 ph1):f2
  DELTA3

#   ifdef LABEL_CN
  (center (p2 ph2) (p22 ph1):f3 )
#   else
  (p2 ph2)
#   endif /*LABEL_CN*/

  DELTA4
  p19:gp2
  d16 pl2:f2
  (p1 ph3)

  (p3 ph10):f2

#   ifdef LABEL_CN
  (p21 ph10):f3
#   else
#   endif /*LABEL_CN*/

  p16:gp3
  d16

  (p1 ph1)
  p19:gp4
  d16
  DELTA5
  (p15:sp18 ph1):f2
  DELTA6

#   ifdef LABEL_CN
  (center (p2 ph2) (p22 ph1):f3 )
#   else
  (p2 ph2)
#   endif /*LABEL_CN*/

  DELTA4
  p19:gp4
  d16 pl2:f2
  (p1 ph3)

  (p3 ph10):f2

#   ifdef LABEL_CN
  (p21 ph10):f3
#   else
#   endif /*LABEL_CN*/

  p16:gp5
  d16

  (p1 ph9)
  4u
  p16:gp6
  d16 pl0:f1
  (p11:sp1 ph3:r):f1
  4u
  4u pl1:f1
  (p2 ph1)
  4u pl0:f1
  (p11:sp1 ph3:r):f1
  4u
  p16:gp6
  d16
  4u BLKGRAD

  go=2 ph31
  d11 mc #0 to 2 
     F1PH(calph(ph4, +90), caldel(d0, +in0))
     F2PH(calph(ph6, +90) & calph(ph7, +90), caldel(d10, +in10))
exit


ph1=0
ph2=1
ph3=2
ph4=0 2
ph5=0 0 0 0 2 2 2 2
ph6=1 1 3 3
ph7=2 2 0 0 
ph8=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph9=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph10=0 1 2 3
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;sp1 : f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;spnam13: Crp60,0.5,20.1
;sp18: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p15: f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse                       [1 msec]
;p19: gradient pulse 2                               [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse in inept transfer      [1 msec]
;d0 : incremented delay (F1 in 3D)                   [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CH)av)
;d8 : mixing time
;d10: incremented delay (F2 in 3D)                   [3 usec]
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d26: 1/(4J(NH))
;d28: 1/(4*J(CH)min)
;d29: 1/(4*J(CH)max)
;cnst2: = J(CH)av
;cnst4: = J(NH)
;cnst6: = 1J(CH)min
;cnst7: = 1J(CH)max
;inf1: 1/SW(C) = 2 * DW(C)
;inf2: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(C)) = DW(C)
;nd0: 2
;in10: 1/(2 * SW(H)) = DW(H)
;nd10: 2
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2


;for z-only gradients:
;gpz1: -20%
;gpz2: 3%
;gpz3: 11%
;gpz4: 2%
;gpz5: 7%
;gpz6: 30%
;gpz7: 10%
;gpz8: -5%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam8: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;for p15:sp18 use either "Crp60,0.5,20.1" or adiabatic pulse 
;   with matched sweep 
;for matched sweep use 
;   low to high field sweep, 
;   carrier shifted to center of spectrum (75 ppm) via spoffs18
;   d28 = d29 = 1/(4*J(CH) center of spectrum [1.696 ms])



;$Id:$
