;hsqclrphppsp
;avance-version (20/08/26)
;HSQC
;2D H-x/X correlation via inept transfer for long range couplings
;phase sensitive in F1 
;no decoupling during aquisition
;using vd list for long-range coupling evolution
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


define list<delay> VD_LIST={0.00 0.01 0.02 0.03}


"p2=p1*2"
"p4=p3*2"
"d63=(1s/(cnst13*4))-0.01s"
"d11=30m"
"d4=d63"


"d0=3u"

"in0=inf1/2"


"td0=VD_LIST.len"


"DELTA=d0*2+p44"


1 ze
  d11 pl12:f2
2 d1
  "d4=d63+(VD_LIST/2)"
  
  (p1 ph1)
  d4 pl2:f2
  (center (p2 ph1) (p4 ph9):f2 )
  d4

#   ifdef TRIMP
  (p28 ph1)
#   endif /* TRIMP */ 

  4u
  (p1 ph2)
  
  (p3 ph6):f2
  d0
  (p44:sp30 ph8)
  d0 
  (p4 ph7):f2
  DELTA pl1:f1
  (p3 ph7):f2
  
  (p1 ph1)
  
  go=2 ph31
  d1 mc #0 to 2
     F0(zd, VD_LIST.inc)
     F1PH(calph(ph6, +90) & calph(ph9, +90), caldel(d0, +in0))
exit


ph1=0
ph2=1
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=0 2
ph7=0 0 2 2
ph8=0 0 0 0 2 2 2 2
ph9=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp30 : f1 channel - shaped pulse 180 degree (Bip720,50,20.1)
;spnam30 : Bip720,50,20.1
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse                        [1 msec]
;p44 : f1 channel - 180 degree shaped pulse for refocussing
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;cnst13: = nJ(XH) long range
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;Processing

;PH_mod(F1): pk (or no)

;use xfb and xf2m



;$Id:$
