;hsqcnoegpsi
;avance-version (21/09/15)
;2D H-1/X correlation via double inept transfer
;   using sensitivity improvement
;for measuring H1-C13 NOEs
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;recording NONOE and NOE interleaved
;(use parameterset HSQCNOEGPSI)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p0=p1*4/3"
"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"
"d24=1s/(cnst2*cnst11)"
"d25=1s/(cnst2*cnst12)"

		
"d0=3u"

"in0=inf1/2"


"DELTA2=p19+d16+8u"
"DELTA3=d25-p19-d16-4u"
"DELTA4=d4-larger(p2,p8)/2"

#   ifdef LABEL_CN
"DELTA1=d25-p19-d16-larger(p2,p22)-d0*2"
#   else
"DELTA1=d25-p19-d16-p2-d0*2"
#   endif /*LABEL_CN*/


"l0=1"
"l4=d1/(p0+5m)"


"spoffs13=0"

		
1 ze
  d11 pl12:f2
2 d11 do:f2
3 d12

  if "l0 %2 == 1"
     {
     d1
     4u
     50u UNBLKGRAD
     }
  else
     {
4    (p0 ph1)
     5m
     lo to 4 times l4
     4u
     50u UNBLKGRAD
     }

  (p1 ph1)
  p16:gp3
  d16
  (p1 ph2)
  p16:gp4
  d16 pl2:f2

  (p3 ph8):f2
  4u
  p19:gp1*-1*EA
  d16
  DELTA3
  (p4 ph6):f2
  d0 

#   ifdef LABEL_CN
  (center (p2 ph9) (p22 ph1):f3 )
#   else
  (p2 ph9)
#   endif /*LABEL_CN*/

  d0
  p19:gp1*EA
  d16
  DELTA1

  (center (p1 ph1) (p3 ph4):f2 )
  d24
  (center (p2 ph1) (p4 ph1):f2 )
  d24
  (center (p1 ph2) (p3 ph5):f2 )
  DELTA4
  (center (p2 ph1) (p8:sp13 ph1):f2 )
  DELTA4
  (p1 ph1)
  DELTA2
  (p2 ph1)
  4u
  p19:gp2
  d16 pl12:f2
  4u  BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2
     F1I(iu0, 2)
     F1EA(calgrad(EA) & calph(ph5, +180), caldel(d0, +in0) & calph(ph6, +180) & calph(ph8, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph4=0 0 2 2
ph5=3 3 1 1
ph6=0
ph7=3
ph8=1 3 
ph9=0 0 2 2
ph31=0 2 2 0 
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp13: f2 channel - shaped pulse 180 degree  (adiabatic)
;p0 : f1 channel - 120 degree high power pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse
;p19: gradient pulse 2                               [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(XH))
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d24: 1/(4J)XH for XH
;     1/(8J)XH for all multiplicities
;d25: 1/(6J)XH for all multiplicities
;cnst2: = J(XH)
;cnst11: for multiplicity selection = 4 for CH, 8 for all multiplicities
;cnst12: for multiplicity selection = 6 for all multiplicities
;l0: flag to switch between NOE and NONOE
;l4: loop for saturation sequence: = d1 / (p0 + 5m)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: >= 32
;td1: total number of experiments
;        = number of experiments for each 2D * 2
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1 : gp 2 : gp 3 : gp 4
;			  80 : 40.2 :   80 :   80     for C-13

;for z-only gradients:
;gpz1: 80%
;gpz2: 40.2%
;gpz3: 80%
;gpz4: 80%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;use AU-program split [2] to separate NOE and NONOE data into
;   different datasets



;$Id: $
