;hsqcnoesyhmqccngp4d
;avance-version (21/09/15)
;(C13)HSQC-NOESY-(N15)HMQC
;4D sequence with
;   homonuclear correlation via dipolar coupling
;   dipolar coupling may be due to noe or chemical exchange.
;   H-1/X correlation via double inept transfer
;      or heteronuclear zero and double quantum coherence
;      using sensitivity improvement
;phase sensitive (t1)
;phase sensitive (t2)
;phase sensitive (t3)
;with decoupling during acquisition
;using shaped pulses for inversion on f2 - channel
;(use parameterset )
;
;(T. Diercks, M. Coles & H. Kessler, J. Biomol. NMR, 15,
;   177-180 (1999) )
;
;$CLASS=HighRes
;$DIM=4D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"
"d21=1s/(cnst4*2)"


"in31=inf1/2"
"in32=inf2/2"
"in33=inf3"

"d31=3u"
"d32=3u"
"d33=in33/2-p21*4/3.1415"


"DELTA1=d4-larger(p2,p8)/2"
"DELTA2=d31*2+larger(p2,p22)"
"DELTA3=d32*2+larger(p8,p22)-p8"
"DELTA4=d21-p16-d16"

"TAU=d8-p16-d16-p29-4u"
"TAU1=de+4u"
"TAU2=p1*2/3.1416"


"spoffs13=bf2*(cnst26/1000000)-o2"


"cnst62=-(bf1*cnst20-(o1*1000000))"
"cnst63=(bf1*cnst20-(o1*1000000))*(inf2/1000000)*360.0"


"o1_F2=bf1*cnst20/1000000"


"TAU9=abs(cnst62+cnst63)/100000"


"acqt0=0"
baseopt_echo


1 ze
  d11 pl16:f3
2 d11 do:f3
3 d12 pl32:f1
  
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1

  (p1 ph1)
  DELTA1
  (center (p2 ph2) (p8:sp13 ph1):f2 )
  DELTA1 UNBLKGRAD
  (p1 ph2)

  p16:gp3
  d16 pl2:f2 pl3:f3

  (p3 ph3):f2
  d31
  (center (p2 ph8) (p22 ph1):f3 )
  d31
  (p4 ph1):f2
  DELTA2
  (p3 ph1):f2

  p16:gp4
  d16

  (p1 ph9)
  d4
  DELTA3
  (p8:sp13 ph1):f2
  (p2 ph10)
  d4

  d32
  (center (p8:sp13 ph1):f2 (p22 ph1):f3 )
  d32
  (p1 ph6)

  TAU
  p16:gp5
  d16
  (p29:sp11 ph6)
  2u
  2u pl1:f1

  (p1 ph1)
  TAU1
  p16:gp6
  d16
  (center (p11:sp1 ph7 2u 2u pl1 p2 ph8 4u p11:sp1 ph7):f1 (p8:sp13 ph1):f2 (DELTA4 p21 ph4 d33 p21 ph5 DELTA4):f3 )
  p16:gp6
  d16 pl16:f3
  TAU2
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d31, +in31))
     F2PH(calph(ph9, +90) & calph(ph10, +90), caldel(d32, +in32) & calph(ph9, cnst63) & calph(ph10, cnst63))
     F3PH(calph(ph4, +90), caldel(d33, +in33))

TAU9
exit
   

ph1=0 
ph2=1
ph3=0 0 2 2
ph4=0 2
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=2
ph7=3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3
    1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
ph8=1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
    3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3
ph9=1 1 1 1 3 3 3 3
ph10=2 2 2 2 0 0 0 0
ph29=0
ph31=2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl32: f1 channel - power level for low power presaturation
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp11: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3: f3 channel -  90 degree high power pulse
;p4: f3 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p29: f1 channel -  90 degree shaped pulse (flipback pulse)
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CH))
;d8 : mixing time
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH))
;d31: incremented delay (F1 in 4D)                     [3 usec]
;d32: incremented delay (F2 in 4D)                     [3 usec]
;d33: incremented delay (F3 in 4D) = in33/2-p21*4/3.1415
;cnst2: = J(CH)
;cnst4: = J(NH)
;cnst20: H(ali) chemical shift (offset, in ppm)
;cnst26: Call chemical shift (offset, in ppm)          [101 ppm]
;cnst62: offset for Hali region (Hz)
;cnst63: additional phase increment to center Hali region
;inf1: 1/SW(C) = 2 * DW(C)
;inf2: 1/SW(Hali) = 2 * DW(Hali)
;inf3: 1/SW(N) = 2 * DW(N)
;in31: 1/(SW(C)) = 2 * DW(C)
;in32: 1/(2 * SW(Hali)) = DW(Hali)
;in33: 1/(SW(N)) = 2 * DW(N)
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;td3: number of experiments in F3
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;FnMODE: States-TPPI (or TPPI) in F3
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz3: -40%
;gpz4: 70%
;gpz5: 60%
;gpz6: 30%


;use gradient files:   
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100



;set pl32 to 0W when presaturation is not required
;   use pl1 + 75 to 80dB to reduce radiation damping



;Processing

;PHC0(F3): 90
;PHC1(F3): -180
;FCOR(F3): 1



;$Id: $
