;hsqcnoesyhsqcccgp4d.t5.be
;avance-version (20/08/06)
;(C13)HSQC-NOESY-(C13)HSQC
;4D sequence with
;   homonuclear correlation via dipolar coupling
;   dipolar coupling may be due to noe or chemical exchange.
;   H-1/X correlation via double inept transfer
;      using sensitivity improvement
;phase sensitive (t1)
;phase sensitive (t2)
;phase sensitive using Echo/Antiecho-TPPI gradient selection (t3)
;with decoupling during acquisition
;using trim pulses in inept transfer
;using shaped pulses for inversion on f2 - channel
;(use parameterset HSQCNOESYHSQCCCGP4D)
;
;(A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance, J. Magn.
;   Reson. 93, 151-170 (1991) )
;(L.E. Kay, P. Keifer & T. Saarinen, J. Am. Chem. Soc. 114,
;   10663-5 (1992) )
;(J. Schleucher, M. Schwendinger, M. Sattler, P. Schmidt,
;   O. Schedletzky, S.J. Glaser, O.W. Sorensen & C. Griesinger,
;   J. Biomol. NMR 4, 301-306 (1994) )
;
;$CLASS=HighRes
;$DIM=4D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"


"d31=3u"
"d32=3u"
"d33=3u"

"in31=inf1/2"
"in32=inf2/2"
"in33=inf3/2"


"DELTA=d4-larger(p2,p8)/2-4u"
"DELTA4=p16+d16+8u+de-p1*2/3.1416"
"DELTA5=d24-p19-d16-4u"
"DELTA6=d4-p19-d16-larger(p2,p8)/2-4u"

#   ifdef LABEL_CN
"DELTA1=d31*2+larger(p2,p22)"
"DELTA2=d32*2+larger(p8,p22)-p8"
"DELTA3=d33*2+p16+d16+larger(p2,p22)"
#   else
"DELTA1=d31*2+p2"
"DELTA2=d32*2"
"DELTA3=d33*2+p16+d16+p2"
#   endif /*LABEL_CN*/

"TAU=d8-p16-d16"


"cnst62=-(bf1*cnst20-(o1*1000000))"
"cnst63=(bf1*cnst20-(o1*1000000))*(inf2/1000000)*360.0"


"o1_F2=bf1*cnst20/1000000"


"TAU9=abs(cnst62+cnst63)/100000"



1 ze
  d11 pl12:f2
2 d11 do:f2
3 d12 pl32:f1

  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  50u UNBLKGRAD

  (p1 ph1)
  DELTA
  4u
  (center (p2 ph1) (p8:sp13 ph1):f2 )
  4u
  DELTA pl2:f2

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) 

  4u
  p16:gp3
  d16

  (p3 ph3):f2
  d31 

#   ifdef LABEL_CN
  (center (p2 ph9) (p22 ph1):f3 )
#   else
  (p2 ph9)
#   endif /*LABEL_CN*/

  d31
  (p4 ph1):f2
  DELTA1
  (p3 ph1):f2

  (p1 ph4)
  d4
  DELTA2
  (p8:sp13 ph1):f2
  (p2 ph5)
  d4

  d32

#   ifdef LABEL_CN
  (center (p8:sp13 ph1):f2 (p22 ph1):f3 )
#   else
  (p8:sp13 ph1):f2
#   endif /*LABEL_CN*/

  d32
  (p1 ph2)

  TAU
  p16:gp4
  d16

  (p1 ph1)
  DELTA
  4u
  (center (p2 ph1) (p8:sp13 ph1):f2 )
  4u
  DELTA pl2:f2
  (p1 ph2) 

  4u
  p16:gp5
  d16

  (p3 ph6):f2
  d33 

#   ifdef LABEL_CN
  (center (p2 ph9) (p22 ph1):f3 )
#   else
  (p2 ph9)
#   endif /*LABEL_CN*/

  d33
  p16:gp1*EA
  d16
  (p4 ph7):f2
  DELTA3
  (center (p1 ph1) (p3 ph7):f2 )
  4u
  p19:gp6
  d16
  DELTA5
  (center (p2 ph1) (p4 ph1):f2 )
  DELTA5
  4u
  p19:gp6
  d16
  (center (p1 ph2) (p3 ph8):f2 )
  4u
  p19:gp7
  d16
  DELTA6
  (center (p2 ph1) (p8:sp13 ph1):f2 )
  4u
  DELTA6
  p19:gp7
  d16
  (p1 ph1)
  DELTA4
  (p2 ph1)
  4u
  p16:gp2
  d16 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d31, +in31)) 
     F2PH(calph(ph4, +90) & calph(ph5, +90), caldel(d32, +in32) & calph(ph4, cnst63) & calph(ph5, cnst63))
     F3EA(calgrad(EA) & calph(ph8, +180), caldel(d33, +in33) & calph(ph6, +180) & calph(ph31, +180))

TAU9
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=1 1 1 1 3 3 3 3
ph6=0 0 2 2
ph7=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph8=1 1 1 1 1 1 1 1 3 3 3 3 3 3 3 3
ph9=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph29=0
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl32: f1 channel - power level for low power presaturation
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3: f3 channel -  90 degree high power pulse
;p4: f3 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse                         [1 msec]
;p19: gradient pulse 2                                 [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse                          [1 msec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CH))
;d8 : mixing time
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d24: 1/(4J)CH for CH
;     1/(8J)CH for all multiplicities
;d31: incremented delay (F1 in 4D)                     [3 usec]
;d32: incremented delay (F2 in 4D)                     [3 usec]
;d33: incremented delay (F3 in 4D)                     [3 usec]
;cnst2: = J(CH)
;cnst20: H(ali) chemical shift (offset, in ppm)
;cnst62: offset for Hali region (Hz)
;cnst63: additional phase increment to center Hali region
;inf1: 1/SW(C) = 2 * DW(C)
;inf2: 1/SW(Hali) = 2 * DW(Hali)
;inf3: 1/SW(C) = 2 * DW(C)
;in31: 1/(SW(C)) = 2 * DW(C)
;in32: 1/(2 * SW(Hali)) = DW(Hali)
;in33: 1/(SW(N)) = 2 * DW(N)
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;td3: number of experiments in F3
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;FnMODE: echo-antiecho in F3
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1%
;gpz3: -40%
;gpz4: -10%
;gpz5: 40%
;gpz6: 5%
;gpz7: -2%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;set pl32 to 0W when presaturation is not required
;   use pl1 + 75 to 80dB to reduce radiation damping



;$Id:$
