;hsqcnoesyhsqccngp4d
;avance-version (21/09/15)
;(C13)HSQC-NOESY-(N15)HSQC
;4D sequence with
;   homonuclear correlation via dipolar coupling
;   dipolar coupling may be due to noe or chemical exchange.
;   H-1/X correlation via double inept transfer
;      using sensitivity improvement
;phase sensitive (t1)
;phase sensitive (t2)
;phase sensitive using Echo/Antiecho-TPPI gradient selection (t3)
;with decoupling during acquisition
;using shaped pulses for inversion on f2 - channel
;(use parameterset HSQCNOESYHSQCCNGP4D)
;
;(T. Diercks, M. Coles & H. Kessler, J. Biomol. NMR, 15,
;   177-180 (1999) )
;
;$CLASS=HighRes
;$DIM=4D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"
"d26=1s/(cnst4*4)"


"d31=3u"
"d32=3u"
"d33=3u"

"in31=inf1/2"
"in32=inf2/2"
"in33=inf3/2"


"DELTA1=d4-larger(p2,p8)/2"
"DELTA2=d31*2+larger(p2,p22)"
"DELTA3=p16+d16+larger(p2,p8)+d33*2"
"DELTA4=p16+d16+8u+de-p1*2/3.1416"
"DELTA5=d32*2+larger(p8,p22)-p8"
"DELTA6=d24-p16-d16-4u"
"DELTA7=d26-p16-d16-4u"

"TAU=d8-p16-d16-p11-8u"


"spoffs13=bf2*(cnst26/1000000)-o2"


"cnst62=-(bf1*cnst20-(o1*1000000))"
"cnst63=(bf1*cnst20-(o1*1000000))*(inf2/1000000)*360.0"


"o1_F2=bf1*cnst20/1000000"


"TAU9=abs(cnst62+cnst63)/100000"


1 ze
  d11 pl16:f3
2 d11 do:f3
3 d12 pl32:f1
  
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1

  (p1 ph1)
  DELTA1
  (center (p2 ph2) (p8:sp13 ph7):f2 )
  DELTA1 UNBLKGRAD
  (p1 ph2)

  p16:gp3
  d16 pl2:f2 pl3:f3

  (p3 ph3):f2
  d31
  (center (p2 ph8) (p22 ph1):f3 )
  d31
  (p4 ph1):f2
  DELTA2
  (p3 ph1):f2

  p16:gp4
  d16

  (p1 ph11)
  d4
  DELTA5
  (p8:sp13 ph1):f2
  (p2 ph12)
  d4

  d32
  (center (p8:sp13 ph1):f2 (p22 ph1):f3 )
  d32
  (p1 ph9)

  TAU
  p16:gp5
  d16 pl0:f1

  (p11:sp1 ph2):f1
  4u
  4u pl1:f1

  (p1 ph1)
  d26
  (center (p2 ph1) (p22 ph10):f3 )
  d26
  (p1 ph2) 

  p16:gp6
  d16

  (p21 ph4):f3
  d33 
  (center (p2 ph8) (p8:sp13 ph1):f2 )
  d33
  p16:gp1*EA
  d16
  (p22 ph5):f3
  DELTA3

  (center (p1 ph1) (p21 ph5):f3 )
  4u
  p16:gp7
  d16
  DELTA6
  (center (p2 ph2) (p22 ph1):f3 )
  DELTA6
  4u
  p16:gp7
  d16
  (center (p1 ph2) (p21 ph6):f3 )
  4u
  p16:gp8
  d16
  DELTA7
  (center (p2 ph2) (p22 ph1):f3 )
  DELTA7
  4u
  p16:gp8
  d16
  (p1 ph1)
  DELTA4
  (p2 ph1)
  4u
  p16:gp2
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d31, +in31))
     F2PH(calph(ph11, +90) & calph(ph12, +90), caldel(d32, +in32) & calph(ph11, cnst63) & calph(ph12, cnst63))
     F3EA(calgrad(EA) & calph(ph6, +180), caldel(d33, +in33) & calph(ph4, +180) & calph(ph10, +180) & calph(ph31, +180))

TAU9
exit
   

ph1=0 
ph2=1
ph3=0 0 2 2
ph4=0 2
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=3 3 3 3 3 3 3 3 1 1 1 1 1 1 1 1
ph7=0
ph8=1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
    3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3
ph9=2
ph10=0
ph11=1 1 1 1 3 3 3 3
ph12=2 2 2 2 0 0 0 0
ph29=0
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl32: f1 channel - power level for low power presaturation
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3: f3 channel -  90 degree high power pulse
;p4: f3 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CH))
;d8 : mixing time
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d24: 1/(4J)NH for NH
;     1/(8J)NH for all multiplicities
;d26: 1/(4J(NH))
;d31: incremented delay (F1 in 4D)                     [3 usec]
;d32: incremented delay (F2 in 4D)                     [3 usec]
;d33: incremented delay (F3 in 4D)                     [3 usec]
;cnst2: = J(CH)
;cnst4: = J(NH)
;cnst20: H(ali) chemical shift (offset, in ppm)
;cnst26: Call chemical shift (offset, in ppm)          [101 ppm]
;cnst62: offset for Hali region (Hz)
;cnst63: additional phase increment to center Hali region
;inf1: 1/SW(C) = 2 * DW(C)
;inf2: 1/SW(Hali) = 2 * DW(Hali)
;inf3: 1/SW(N) = 2 * DW(N)
;in31: 1/(SW(C)) = 2 * DW(C)
;in32: 1/(2 * SW(Hali)) = DW(Hali)
;in33: 1/(SW(N)) = 2 * DW(N)
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;td3: number of experiments in F3
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;FnMODE: echo-antiecho in F3
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:
;      gp 1 : gp 2 : gp 3 : gp 4 : gp 5 : gp 6 : gp 7 : gp 8
;        80 :  8.1 :  -40 :   70 :   60 :  -20 :    5 :   -2

;for z-only gradients:
;gpz1: 80%
;gpz2: 8.1%
;gpz3: -40%
;gpz4: 70%
;gpz5: 60%
;gpz6: -20%
;gpz7: 5%
;gpz8: -2%


;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam8: SMSQ10.100



;set pl32 to 0W when presaturation is not required
;   use pl1 + 75 to 80dB to reduce radiation damping



;$Id: $
