;hsqcphps
;avance-version (20/03/03)
;HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive
;with decoupling during acquisition
;using shaped pulse for off-resonance presaturation
;
;G. Bodenhausen & D.J. Ruben, Chem. Phys. Lett. 69, 185 (1980)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"


"d0=3u"

"in0=inf1/2"


"DELTA=d0*2+p2"


"if (d1/p18 < 1) {l6=1;} else {l6=d1/p18;}"


1 ze 
  d11 pl12:f2
2 d11 do:f2
3 d12
4 p18:sp6:f1 ph29
  4u 
  lo to 4 times l6
  d12 pl1:f1
  p1 ph1
  d4 pl2:f2
  (center (p2 ph2) (p4 ph9):f2 )
  d4

#   ifdef TRIMP
  (p28 ph1)
#   endif /* TRIMP */

  (p1 ph3) 
  (p3 ph6):f2
  d0
  (p2 ph8)
  d0
  (p4 ph7):f2
  DELTA
  (p3 ph7):f2
  (p1 ph4) 
  d4
  (center (p2 ph2) (p4 ph5):f2 )
  d4 pl12:f2
  go=2 ph31 cpd2:f2 
  d11 do:f2 mc #0 to 2 F1PH(calph(ph6, +90) & calph(ph9, +90) & calph(ph29, +90), caldel(d0, +in0))
exit 
  

ph1=0
ph2=0
ph3=1
ph4=1
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=0 2
ph7=0 0 0 0 2 2 2 2
ph8=0 0 2 2
ph9=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph29=0
ph31=0 2 0 2 2 0 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp6: f1 channel - shaped pulse for presaturation
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p18: f1 channel - presaturation using shaped pulse
;p28: f1 channel -  trim pulse                         [1 msec]
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;cnst2: = J(XH)
;l6: p18 * l6 = total duration of presaturation
;                  during relaxation delay           [16]
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end
;use 100msec pulse of square shape defined by 1000 points



;$Id:$
