;hsqct1etf3gpsi.2
;avance-version (21/09/15)
;2D H-1/X correlation via double inept transfer
;   using sensitivity improvement
;for measuring N-15 T1 relaxation times
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using f3 - channel
;using flip-back pulse
;using H-1 180o pulses rather than cpd decoupling
;(use parameterset HSQCT1ETF3GPSI.2)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d24=1s/(cnst4*cnst11)"
"d25=1s/(cnst4*cnst12)"
"d26=1s/(cnst4*4)"


"d0=3u"

"in0=inf1/2"


"DELTA2=p16+d16+8u"
"DELTA3=d25-p16-d16-4u"
"DELTA4=2.5m-p2/2"
"DELTA5=2.5m-p2/2-p16-d16-4u"

#   ifdef LABEL_CN
"DELTA1=d25-p16-d16-larger(p2,p8)-d0*2"
#   else
"DELTA1=d25-p16-d16-p2-d0*2"
#   endif /*LABEL_CN*/


"COUNTER=( (d7-10m) / 10m )"


"spoffs1=0"
"spoffs13=bf2*((cnst21+cnst22)/2000000)-o2"


1 ze
  d11 pl16:f3
2 d11 do:f3 
3 d1
  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph1) (p22 ph1):f3 )
  d26 UNBLKGRAD
  (p1 ph2)

  4u pl0:f1
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16 pl1:f1

  (p21 ph3):f3
  d25 
  (center (p2 ph1) (p22 ph1):f3  )
  d25
  (p21 ph2):f3

  DELTA4
  (p2 ph10):f1
  DELTA4

4 DELTA4
  (p2 ph1):f1
  DELTA4
  DELTA4
  (p2 ph10):f1
  DELTA4
  lo to 4 times COUNTER

  DELTA4
  (p2 ph1):f1
  4u
  p16:gp4
  d16
  DELTA5

  (p21 ph8):f3
  4u
  p16:gp2*-1*EA
  d16
  DELTA3
  (p22 ph6):f3
  d0

#   ifdef LABEL_CN
  (center (p2 ph9) (p8:sp13 ph1):f2  )
#   else
  (p2 ph9)
#   endif /*LABEL_CN*/

  d0
  p16:gp2*EA
  d16
  DELTA1

  (center (p1 ph1) (p21 ph4):f3 )
  d24
  (center (p2 ph1) (p22 ph1):f3 )
  d24
  (center (p1 ph2) (p21 ph5):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph1)
  DELTA2
  (p2 ph1)
  4u
  p16:gp3
  d16 pl16:f3
  4u  BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 
     F1EA(calgrad(EA) & calph(ph5, +180), caldel(d0, +in0) & calph(ph6, +180) & calph(ph8, +180) & calph(ph31, +180))

exit
   

ph0=0 
ph1=0 
ph2=1
ph3=0 0 0 0 2 2 2 2 
ph4=0 0 2 2
ph5=3 3 1 1
ph6=0
ph7=3
ph8=1 3 
ph9=0 0 2 2
ph10=2
ph31=0 2 2 0 2 0 0 2
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1 : f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree  (Ca and C=O, adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d7 : delay for inversion recovery
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d24: 1/(4J)YH for YH
;     1/(8J)YH for all multiplicities
;d25: 1/(4J)YH for YH
;     1/(8J)YH for all multiplicities
;d26: 1/(4J(YH))
;cnst4: = J(YH)
;cnst11: for multiplicity selection = 4 for NH, 8 for all multiplicities
;cnst12: for multiplicity selection = 4 for NH, 8 for all multiplicities
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1 : gp 2 : gp 3 : gp 4
;                         50 :   80 : 16.2 :   30  for N-15

;for z-only gradients:
;gpz1: 50%
;gpz2: 80%
;gpz3: 16.2%
;gpz4: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
