;hsqct2etf3gpsi
;avance-version (21/09/15)
;2D H-1/X correlation via double inept transfer
;   using sensitivity improvement
;for measuring N-15 T2 relaxation times
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using f3 - channel
;using flip-back pulse
;(use parameterset HSQCT2ETF3GPSI)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d24=1s/(cnst4*cnst11)"
"d25=1s/(cnst4*cnst12)"
"d26=1s/(cnst4*4)"

"d21=450u"

		
"d0=3u"

"in0=inf1/2"


"DELTA2=p16+d16+8u"
"DELTA3=d21-p2/2"
"DELTA4=d25-p16-d16"

#   ifdef LABEL_CN
"DELTA1=d25-p16-d16-larger(p2,p8)-d0*2"
#   else
"DELTA1=d25-p16-d16-p2-d0*2"
#   endif /*LABEL_CN*/


"COUNTER=l5*4"


"l4=d20/(p30*16+d21*32)"


"d31=(p30*16+d21*32)*l4"


"spoffs1=0"
"spoffs13=bf2*((cnst21+cnst22)/2000000)-o2"

		
1 ze
  d11 pl16:f3
2 d11 do:f3 
3 d12 pl23:f3

4 d21
  (p30 ph1 d21*2 p30 ph1 d21*2 p30 ph1 d21*2 p30 ph1):f3
  d21
  lo to 4 times COUNTER

  d1
  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph1) (p22 ph1):f3 )
  d26 UNBLKGRAD
  (p1 ph2)

  4u pl0:f1
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16 pl1:f1

  (p21 ph3):f3
  d25 
  (center (p2 ph1) (p22 ph6):f3 )
  d25 pl23:f3

5 d21
  (p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6):f3
  DELTA3
  (p2 ph1)
  DELTA3
  (p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6):f3
  d21*2
  (p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6):f3
  DELTA3
  (p2 ph1)
  DELTA3
  (p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6):f3
  d21
  lo to 5 times l4

  p16:gp2*-1*EA
  d16
  DELTA4 pl3:f3
  (p22 ph6):f3
  d0 

#   ifdef LABEL_CN
  (center (p2 ph7) (p8:sp13 ph1):f2 )
#   else
  (p2 ph7)
#   endif /*LABEL_CN*/

  d0
  p16:gp2*EA
  d16
  DELTA1

  (center (p1 ph1) (p21 ph4):f3 )
  d24
  (center (p2 ph1) (p22 ph1):f3 )
  d24
  (center (p1 ph2) (p21 ph5):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph1)
  DELTA2
  (p2 ph1)
  4u
  p16:gp3
  d16 pl16:f3
  4u  BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 
     F1EA(calgrad(EA) & calph(ph5, +180), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
  d31
exit
   

ph0=0 
ph1=0 
ph2=1
ph3=0 2 
ph4=0 0 2 2
ph5=3 3 1 1
ph6=0 0 0 0 2 2 2 2
ph7=0 0 2 2
ph31=0 2 2 0
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl23: f3 channel - power level for TOCSY-spinlock
;sp1 : f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree  (Ca and C=O, adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p30: f3 channel - 180 degree pulse at pl23
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: wanted T2 delay
;d21: echo delay                                     [450 usec]
;d24: 1/(4J)YH for YH
;     1/(8J)YH for all multiplicities
;d25: 1/(4J)YH for YH
;     1/(8J)YH for all multiplicities
;d26: 1/(4J(YH))
;d31: T2 delay as executed
;cnst4: = J(YH)
;cnst11: for multiplicity selection = 4 for NH, 8 for all multiplicities
;cnst12: for multiplicity selection = 4 for NH, 8 for all multiplicities
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;l4: loop for T2 delay
;l5: loop for compensation of heating effects = l4(max) - l4(current)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1 : gp 2 : gp 3
;			  30 :   80 : 16.2   for N-15

;for z-only gradients:
;gpz1: 30%
;gpz2: 80%
;gpz3: 16.2%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
