;hsqctretf3gpsi3d
;avance-version (21/09/15)
;3D H-1/X correlation via double inept transfer
;   using sensitivity improvement
;for measuring N-15 T1rho relaxation times
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using f3 - channel
;using flip-back pulse
;as pseudo3D
;(use parameterset HSQCTRETF3GPSI3D)
;
;K.T. Dayie & G. Wagner, J. Magn. Reson. A 111, 121-126 (1994)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<delay> vd_list=<$VDLIST>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d24=1s/(cnst4*cnst11)"
"d25=1s/(cnst4*cnst12)"
"d26=1s/(cnst4*4)"

"p25=4m"
"d21=p25/4-p2/2"


"d10=3u"

"in10=inf2/2"

		
"DELTA2=p16+d16+8u"
"DELTA3=d25-p16-d16"

#   ifdef LABEL_CN
"DELTA1=d25-p16-d16-larger(p2,p8)-d10*2-p21*2/3.1415"
#   else
"DELTA1=d25-p16-d16-p2-d10*2-p21*2/3.1415"
#   endif /*LABEL_CN*/


"spoffs1=0"
"spoffs13=bf2*((cnst21+cnst22)/2000000)-o2"


aqseq 312


1 ze
  d11 pl16:f3 st0
2 6m do:f3 
3 6m
4 d1

  "COUNTER=( vd_list / p25 )"

  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph1) (p22 ph1):f3 )
  d26 UNBLKGRAD
  (p1 ph2)

  4u pl0:f1
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16 pl1:f1

  (p21 ph3):f3
  d25 
  (center (p2 ph1) (p22 ph6):f3 )
  d25 pl25:f3

6 (d21 p2 ph1 d21*2 p2 ph9 d21):f1 (p25 ph8):f3
  lo to 6 times COUNTER

  p16:gp2*-1*EA
  d16
  DELTA3 pl3:f3
  (p22 ph6):f3
  d10

#   ifdef LABEL_CN
  (center (p2 ph7) (p8:sp13 ph1):f2 )
#   else
  (p2 ph7)
#   endif /*LABEL_CN*/

  d10
  p16:gp2*EA
  d16
  DELTA1

  (center (p1 ph1) (p21 ph4):f3 )
  d24
  (center (p2 ph1) (p22 ph1):f3 )
  d24
  (center (p1 ph2) (p21 ph5):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph1)
  DELTA2
  (p2 ph1)
  4u
  p16:gp3
  d16 pl16:f3
  4u  BLKGRAD
  goscnp ph31 cpd3:f3

  3m do:f3
  3m st vd_list.inc
  lo to 3 times nbl

  3m vd_list.res
  3m ipp3 ipp4 ipp5 ipp6 ipp7 ipp31
  lo to 4 times ns

  d11 mc #0 to 4
     F1QF()
     F2EA(calgrad(EA) & calph(ph5, +180) & exec(rppall), caldel(d10, +in10) & calph(ph3, +180) & calph(ph31, +180))
exit
   

ph0=0 
ph1=0 
ph2=1
ph3=0 2 
ph4=0 0 2 2
ph5=3 3 1 1
ph6=0 0 0 0 2 2 2 2
ph7=0 0 2 2
ph8=0
ph9=2
ph31=0 2 2 0
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl25: f3 channel - power level for spinlock
;sp1 : f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree  (Ca and C=O, adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p25: f3 channel - pulse for T1rho spinlock at pl25
;d1 : relaxation delay; 1-5 * T1
;d10 : incremented delay                             [3 usec]
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: length of spinlock period                      [4 msec]
;d24: 1/(4J)YH for YH
;     1/(8J)YH for all multiplicities
;d25: 1/(4J)YH for YH
;     1/(8J)YH for all multiplicities
;d26: 1/(4J(YH))
;cnst4: = J(YH)
;cnst11: for multiplicity selection = 4 for NH, 8 for all multiplicities
;cnst12: for multiplicity selection = 4 for NH, 8 for all multiplicities
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;inf2: 1/SW(X) = 2 * DW(X)
;in10: 1/(2 * SW(X)) = DW(X)
;nd10: 2
;ns: 2 * n
;ds: >= 16
;td1: number of delays in vd-list
;td2: number of experiments in F2
;NBL: = td1
;FnMODE: QF(no-frequency) in F1
;FnMODE: echo-antiecho in F2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1 : gp 2 : gp 3
;			  30 :   80 : 16.2   for N-15

;for z-only gradients:
;gpz1: 30%
;gpz2: 80%
;gpz3: 16.2%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
