;ht_hsqcedetgpsp
;avance-version (20/03/03)
;Hadamard HSQC
;2D H-1/X correlation via double inept transfer
;based on hsqcedetgpsp.3
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;with multiplicity editing during selection step
;using shaped pulses for inversion on f2 - channel
;for matched sweep adiabatic pulses
;
;E. Kupce & R. Freeman, J. Magn. Reson. 162, 300-310 (2003)
;W. Willker, D. Leibfritz, R. Kerssebaum & W. Bermel, Magn. Reson.
;   Chem. 31, 287-292 (1993)
;C. Zwahlen, P. Legault, S.J.F. Vincent, J. Greenblatt, R. Konrat &
;   L.E. Kay, J. Am. Chem. Soc. 119 6711-6721 (1997)
;(R.D. Boyer, R. Johnson & K. Krishnamurthy, 
;   J. Magn. Reson. 165, 253-259 (2003) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=
;
;Experiment Setup:
;(1) use had_pl au-program to get the peak list
;(2) execute the 'wvm -a' command
;(3) start the experiment
;(4) use proc_had au-program for processing


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<shape> SPL=<$VALIST>


"p2=p1*2"
"d4=1s/(cnst2*4)"
"d11=30m"


"DELTA=d21-p16-d16-p2-8u-p3*2/PI"
"DELTA1=d4-larger(p2,p14)/2-p16-d16-de-12u"
"DELTA2=d4-larger(p2,p14)/2"
"DELTA3=d21-p2+p3*2/PI"
"DELTA4=d4-larger(p2,p14)/2-p1*2/PI"  


"acqt0=0"
baseopt_echo


1 ze
  d11 pl12:f2
2 d1 do:f2 
3 (p1 ph1)
  DELTA2 pl0:f2
  4u
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  4u
  DELTA2 pl2:f2 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) 
  4u
  (center (p59:sp59 ph1):f1 (p36:SPL ph1):f2)
  4u pl1:f1 pl2:f2
  (p3 ph3):f2
  4u 
  (p2 ph5)
  4u
  p16:gp1
  d16
  DELTA
  (p31:sp18 ph1):f2
  (p2 ph1)
  DELTA3
  4u
  (p31:sp18 ph1):f2
  2u
  2u pl2:f2
  (p3 ph4):f2

  (p1 ph1) 
  DELTA4 pl0:f2
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u  
  p16:gp2
  d16
  DELTA1 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 F1QF(SPL.inc)
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph31=2 0 2 0 0 2 0 2
  
;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse (180degree inversion)
;spnam3: Crp60,0.5,20.1
;sp18: f2 channel - shaped pulse 180 degree (adiabatic matched sweep)
;spnam18: Crp60_xfilt.2
;sp59
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500usec for Crp60,0.5,20.1
;p16: homospoil/gradient pulse
;p28: f1 channel - trim pulse
;p31: f2 channel - 180 degree shaped pulse for adiabatic matched sweep
;                      1730 us at 600.13 MHz, otherwise: 1730*sqrt(600/x)
;p36: f2 channel - 180 degree shaped pulse for Hadamard experiment
;p59: f1 channel - 180 degree shaped pulse for decoupling [1 msec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: set d21 according to multiplicity selection
;        1/(2J(XH))  XH, XH3 positive, XH2 negative
;cnst2: = J(XH)
;cnst22: bandwidth for Hadamard encoding pulses
;ns: 1 * n
;ds: 4
;td1: size of Hadamard matrix, power of 2 (> # of peaks);
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;WaveMaker shapes
;use 'wvm -a' command to create the necessary shape files
;SPL:wvm:HTinv: gaus180(cnst22 Hz, PL, had)  
;sp3:wvm:wu180: cawurst-20(220 ppm, 0.5 ms) ss=0.5u;
;sp18:wvm:wu180m: cawurst-20(220 ppm, 1.0 ms) ss=1.0u;
;sp59:wvm:HTdec: cawurst-20(20 kHz, 1 ms, [p5]m4) ss=1u;




;$Id: 
