;ht_inv
;avance-version (17/08/18)
;2D Hadamard sequence
;Hadamard encoding test with selective inversion pulses
;MQ interference effects possible in coupled spin systems
;
;E. Kupce & R. Freeman, J. Magn. Reson. 162, 300-310 (2003)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=
;
;Experiment Setup:
;(1) use had_pl au-program to get the peak list
;(2) execute the 'wvm -a' command
;(3) start the experiment
;(4) use proc_had au-program for processing


#include <Avance.incl>


define list<shape> SPL=<$VALIST>


1 ze
2 30m
  d1 
  (p34:SPL ph1):f1
  4u
  4u pl1:f1
  (p1 ph2) 
  go=2 ph31
  30m mc #0 to 2 F1QF(SPL.inc)
exit


ph1=0 2
ph2=0 0 2 2 1 1 3 3
ph31=2 2 0 0 3 3 1 1


;pl1: f1 channel - power level for pulse (default)
;p1:  f1 channel - 90 degree hard pulse duration 
;p34: f1 channel - 180 degree shaped pulse for Hadamard experiment
;cnst22: bandwidth for Hadamard encoding pulses [25 Hz]
;d1:  relaxation delay; 1-5 * T1
;ns: 1 * n
;ds: 4
;FnMODE: QF
;td1: size of Hadamard matrix, power of 2 (> # of peaks);


;WaveMaker shapes
;use 'wvm -a' command to create the necessary shape files
;SPL:wvm:HTinv: sinc180(cnst22 Hz, PL, had)  



;$Id:$
