;ht_noesygpph
;avance-version (17/08/18)
;Hadamard NOESY
;homonuclear correlation via dipolar coupling 
;based on noesgpph
;dipolar coupling may be due to noe or chemical exchange.
;phase sensitive
;with gradient pulses in mixing time
;
;E. Kupce & R. Freeman, J. Magn. Reson. 162, 300-310 (2003)
;J. Jeener, B.H. Meier, P. Bachmann & R.R. Ernst, J. Chem. Phys. 71,
;     4546-4553 (1979)
;R. Wagner & S. Berger, J. Magn. Reson. 123 A, 119-121 (1996)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=
;
;Experiment Setup:
;(1) use had_pl au-program to get the peak list
;(2) execute the 'wvm -a' command
;(3) start the experiment
;(4) use proc_had au-program for processing


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<shape> SPL=<$VALIST>


"p2=p1*2"


"TAU=d8*0.5-p16-d16-50u"


"acqt0=-p1*2/PI"


1 ze
2 d1
  (p34:SPL ph1):f1
  TAU pl1:f1
  50u UNBLKGRAD
  p16:gp1
  d16
  3u
  (p2 ph0):f1
  3u
  p16:gp1*-0.9
  d16
  50u BLKGRAD
  TAU 
  p1 ph2
  go=2 ph31
  d1 mc #0 to 2 F1QF(SPL.inc)
exit

ph0=0 
ph1=0 2 
ph2=0 0 2 2 1 1 3 3
ph31=0 0 2 2 1 1 3 3 


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse                       [1 msec]
;p34: f1 channel - 180 degree shaped pulse for Hadamard experiment
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d16: delay for homospoil/gradient recovery
;cnst22: bandwidth for Hadamard encoding pulses
;ns: 1 * n
;ds: 4
;td1: size of Hadamard matrix, power of 2 (> # of peaks);
;FnMODE: QF


;for z-only gradients (optional):
;gpz1: 40%

;use gradient files (optional):   
;gpnam1: SMSQ10.100



;WaveMaker shapes
;use 'wvm -a' command to create the necessary shape files
;SPL:wvm:HTinv: gaus180(cnst22 Hz, PL, had) 
;gp1:wvm:gwurst.100: wurst_g(20 G/cm, 1 ms)



;$Id:$
