;hxcobicpqf
;avance-version (12/01/11)
;2D heteronuclear shift correlation
;with H-H decoupling in F1 using bird pulse
;with composite 180 degree transmitter pulse
;
;A. Bax, J. Magn. Reson. 53, 517 (1983)
;V. Rutar, J. Magn. Reson. 58, 306 (1984)
;J.A. Wilde & P.H. Bolton, J. Magn. Reson. 59, 343 (1984)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"p4=p3*2"
"d2=1s/(cnst2*2)"
"d3=1s/(cnst2*cnst11)"
"d11=30m"
"d12=20u"


"d0=3u"

"in0=inf1/2"


1 ze
2 d11
3 d1 do:f2 
  d12 pl2:f2
  (p3 ph1):f2
  d0
  (p3 ph6):f2
  d2
  (center (p1 ph3 p1*2.67 ph5 p1 ph3) (p4 ph7):f2 )
  d2
  (p3 ph6):f2
  d0
  d2
  (p3 ph2):f2 (p1 ph4)
  d3 pl12:f2
  go=2 ph31 cpd2:f2
  d11 mc #0 to 2 F1QF(caldel(d0, +in0))
  d2 do:f2
exit


ph1=0
ph2=0 2 1 3
ph3=0 0 0 0 2 2 2 2
ph4=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
    2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph5=1 1 1 1 3 3 3 3
ph6=1 1 1 1 2 2 2 2 3 3 3 3 0 0 0 0
ph7=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph31=0 2 1 3 0 2 1 3 1 3 2 0 1 3 2 0
     2 0 3 1 2 0 3 1 3 1 0 2 3 1 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d3 : 1/(3J(XH)) for all multiplicities
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;cnst2: = J(XH)
;cnst11: = 3 for all multiplicities
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
