;hxcoqf2h
;avance-version (12/01/11)
;2D heteronuclear shift correlation
;using 2H lockswitch unit or BSMS 2H-TX board
;
;A. Bax & G.A. Morris, J. Magn. Reson. 42, 501 (1981)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d2=1s/(cnst5*2)"
"d3=1s/(cnst5*cnst11)"
"d11=30m"
"d12=20u"


"d0=3u"

"in0=inf1/2"


1 ze
  d11 LOCKDEC_ON
  50u LOCKH_ON
  d11 H2_PULSE

2 d11 do:f2
3 d12 H2_LOCK
  d1 LOCKH_OFF
  50u LOCKH_ON
  d20 pl2:f2 H2_PULSE
  (p3 ph1):f2
  d0
  p2 ph3
  d0
  d2
  (p3 ph2):f2 (p1 ph4)
  d3 pl12:f2
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 F1QF(caldel(d0, +in0))

  d11 H2_LOCK LOCKH_OFF
  d11 LOCKDEC_OFF
exit


ph1=0
ph2=0 2 1 3
ph3=0 0 0 0 2 2 2 2
ph4=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
    2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph31=0 2 1 3 0 2 1 3 1 3 2 0 1 3 2 0
     2 0 3 1 2 0 3 1 3 1 0 2 3 1 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d3 : 1/(3J(XH)) for all multiplicities
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d20: delay for recovery of H-2 signal after lock steady state
;cnst5: = J(XD)
;cnst11: = 3 for all multiplicities
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
