;hxdeptbiqf
;avance-version (12/01/11)
;2D heteronuclear shift correlation
;using DEPT sequence
;with H-H decoupling in F1 using BIRD pulse
;
;M.R. Bendall & D.T. Pegg, J. Magn. Reson. 53, 144 (1983)
;T.T. Nakashima et al., J. Magn. Reson. 59, 124 (1984)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"p4=p3*2"
"d2=1s/(cnst2*2)"
"d11=30m"
"d12=20u"


"p0=p3*cnst12"


"d0=3u"

"in0=inf1/2"


1 ze
2 d11
3 d1 do:f2 
  d12 pl2:f2
  (p3 ph1):f2
  d0
  (p3 ph2):f2
  d2
  (center (p4 ph3):f2 (p2 ph6) )
  d2
  (p3 ph2):f2
  d0
  d2
  (p4 ph4):f2 (p1 ph7)
  d2
  (p0 ph5):f2 (p2 ph8)
  d2 pl12:f2
  go=2 ph31 cpd2:f2
  d11 mc #0 to 2 F1QF(caldel(d0, +in0))
  d2 do:f2
exit


ph1=0
ph2=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph3=1 1 1 1 2 2 2 2 3 3 3 3 0 0 0 0
    3 3 3 3 0 0 0 0 1 1 1 1 2 2 2 2
ph4=0 0 0 0 2 2 2 2
ph5=1 3 0 2
ph6=0 0 0 0 2 2 2 2
ph7=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
    2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph8=0 0 0 0 2 2 2 2 1 1 1 1 3 3 3 3
ph31=0 2 1 3 0 2 1 3 1 3 2 0 1 3 2 0
     2 0 3 1 2 0 3 1 3 1 0 2 3 1 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p0 : f2 channel :  p3 * cnst12
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;cnst2: = J(XH)
;cnst12: for multiplicity selection
;           0.5 ( 45 degree pulse) - all positive
;           1.0 ( 90 degree pulse) - XH only
;           1.5 (135 degree pulse) - XH, XH3 positive, XH2 negative
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
