;hxxcoqf
;avance-version (12/01/11)
;X-relayed H,X-COSY
;for correlation of quaternary carbons with protons bound to
;   neighboured carbons via carbon-carbon polarization transfer
;with suppression of signals of protonated carbons
;
;H. Kessler, W. Bermel & C. Griesinger, J. Magn. Reson. 62, 573 (1985)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"p2=p1*2"
"d2=1s/(cnst2*2)"
"d3=1s/(cnst2*cnst11)"
"d4=1s/(cnst3*4)"
"d11=30m"
"d12=20u"

"d0=3u"

"in0=inf1/2"


"DELTA=d4-d3"


1 ze
2 d11
3 d1 do:f2 
  d12 pl2:f2
  (p3 ph1):f2
  d0
  p2 ph3
  d0
  d2
  (p3 ph2):f2 (p1 ph4)
  d3 pl12:f2
  DELTA cpd2:f2
  p2 ph5
  d4
  p1 ph6
  d2 do:f2
  go=2 ph31 cpd2:f2
  d11 mc #0 to 2 F1QF(caldel(d0, +in0))
  d2 do:f2
exit


ph1=0 1 0 1 0 1 0 1 2 3 2 3 2 3 2 3
    2 3 2 3 2 3 2 3 0 1 0 1 0 1 0 1
ph2=0 1 2 3 1 2 3 0 2 3 0 1 3 0 1 2
ph3=0
ph4=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph5=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph6=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d3 : 1/(3J(XH)) for all multiplicities
;d4 : 1/(4J(XX))
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;cnst2: = J(XH)
;cnst3: = J(XX)
;cnst11: = 3 for all multiplicities
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;ns: 128 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
