;ideptnd
;avance-version (12/01/11)
;inverse dept polarization transfer
;no decoupling during acquisition
;
;M.R. Bendall, D.T. Pegg, D.M. Doddrell & J. Field, J. Magn. Reson. 51,
;   520 - 526 (1983)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"p4=p3*2"
"d2=1s/(cnst2*2)"


1 ze
2 30m
  d1
  (p3 ph1):f2
  d2
  (p4 ph2):f2 (p0 ph4)
  d2
  (p3 ph3):f2 (p2 ph5)
  d2
  go=2 ph31
  30m mc #0 to 2 F0(zd)
exit


ph1=0
ph2=0 2 1 3
ph3=1 1 1 1 3 3 3 3
ph4=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
    2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph5=0 2 0 2 0 2 0 2 1 3 1 3 1 3 1 3
ph31=1 1 3 3 3 3 1 1 2 2 0 0 0 0 2 2
     3 3 1 1 1 1 3 3 0 0 2 2 2 2 0 0


;pl1 : f1 channel - power level for pulse (default)
;p0 : f1 channel -  45, 90 or 135 degree high power pulse
;                    45 degree - all positive
;                    90 degree - XH only
;                   135 degree - XH, XH3 positive, XH2 negative
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;cnst2: = J(XH)
;ns: 32 * n, total number of scans: NS * TD0
;ds: 16



;$Id:$
