;idosyhsqc3d
;avance-version (19/02/11)
;iDOSY-ct-HSQC 3D
;3D sequence with
;   diffusion measurement using stimulated echo
;		H-1/X correlation via double inept transfer
;using bipolar gradient pulses for diffusion
;using 2 spoil gradient
;diffusion dimension in F1
;
;A. S. McLachlan, J. J. Richards, A. R. Bilia & G. A. Morris,
;   Magn. Reson. Chem. 47, 1081-1085 (2009)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<gradient> diff=<Difframp>


"cnst30=(sfo2/sfo1)"


"p2=p1*2"
"p4=p3*2"
"d4=(1s*cnst29)/(cnst2*4)"
"d11=30m"

"d20=d23+larger(p2,p14)+d4*2+p19*2+d16*2+p3*2+p1*2+8u"


"d0=3u"
"d30=d23/2-p16-d16-p4/4"

"in0=inf2/2"

"in30=in0"

"td2=tdmax(td2,d30*2,in30)"


"cnst23=1+cnst22"
"cnst24=1-cnst22"


"DELTA1=d4-larger(p2,p14)/2-p16-p30-de-28u"
"DELTA2=d4-larger(p2,p14)/2-p30-d16-4u"
"DELTA3=d23/2-d0-p2-p4/2-4u"
"DELTA4=d4-larger(p2,p14)/2-p1*2/PI-p30-d16-4u"


"acqt0=0"
baseopt_echo


aqseq 321


1 ze
  d11 pl12:f2
2 d1 do:f2
3 (p1 ph1)
  DELTA2 UNBLKGRAD
  p30:gp6*diff*cnst24
  d16
  4u
  (center (p2 ph1) (p14:sp3 ph6):f2 )

  4u
  p30:gp6*-1*diff*cnst23
  d16
  DELTA2 pl2:f2

  (p1 ph2)
  4u
  p19:gp7
  d16
  (p3 ph3):f2

  d0
  (p2 ph5)
  4u
  DELTA3
  (p4 ph7):f2
  
  d30
  p16:gp1*EA*-1
  d16

  (p3 ph4):f2
  4u
  p19:gp7*0.6
  d16
  (p1 ph1)

  4u
  DELTA4
  p30:gp6*diff*cnst24
  d16
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  p30:gp6*-1*diff*cnst23
  20u
  p16:gp1*cnst30
  DELTA1 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2 
  d1 do:f2 mc #0 to 2
     F1QF(calgrad(diff))
     F2EA(calgrad(EA), caldel(d0, +in0) & caldel(d30, -in30) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph7=0 0 1 1
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3 : f2 channel - shaped pulse 180 degree (adiabatic)
;spnam3: Crp60,0.5,20.1 (Crp80,0.5,20.1)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p14 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;     = 500usec for Crp60,0.5,20.1 (Crp80,0.5,20.1)
;p16: gradient pulse for selection                         [1 msec]
;p19: gradient pulse for spoil
;p30: gradient pulse for diffusion (little DELTA * 0.5)
;d0 : incremented delay (2D)                               [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                                   [30 msec]
;d16: delay for homospoil/gradient recovery
;d20: diffusion time (big DELTA) 
;     = d23+larger(p2,p14)+d4*2+p19*2+d16*2+p3*2+p1*2+8u
;d23: = T (constant time period)
;d30: decremented delay (2D) = d23/2-p16-d16-p4/4
;cnst2: = J(XH)
;cnst22: kappa - unbalancing factor 
;cnst23: 1 + kappa
;cnst24: 1 - kappa
;cnst29: 1, 3, 5, ... (if DELTA1 out of range)
;inf2: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;in30: = in0
;ns: 4 * n
;ds: 32
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: QF(no-frequency) in F1
;FnMODE: echo-antiecho in F2
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz6: 100%
;gpz7: -37.13% (spoil)

 
;use gradient files:
;gpnam1: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100



;Processing

;use tf3, tf2 and DOSY processing



;$Id:$
