;iineptrd
;avance-version (12/01/11)
;inverse INEPT with refocussing
;with decoupling during acquisition
;
;M.R. Bendall, D.T. Pegg, D.M. Doddrell & J. Field, J. Mgn. Reson. 51,
;   520 - 526 (1983)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"
"d12=20u"
"d20=1s/(cnst2*cnst11)"


1 ze 
2 30m do:f2
  d1
  d12 pl2:f2
  (p3 ph1):f2 
  d20
  (center (p4 ph2):f2 (p2 ph4) )
  d20
  (p3 ph3):f2 (p1 ph5) 
  d4
  (center (p4 ph2):f2 (p2 ph6) )
  d4 pl12:f2
  go=2 ph31 cpd2:f2
  30m do:f2 mc #0 to 2 F0(zd)
exit


ph1=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph2=0 2 
ph3=1 1 3 3
ph4=0 2 
ph5=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph6=0 2 0 2 1 3 1 3
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(XH))
;d12: delay for power switching                      [20 usec]
;d20: 1/(6J(XH)) for all multiplicities
;cnst2: = J(XH)
;cnst11: = 6 for all multiplicities
;ns: 32 * n, total number of scans: NS * TD0
;ds: 16
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
