;inadcp1d
;avance-version (12/01/11)
;1D INADEQUATE
;using composite pulses
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d4=1s/(cnst3*4)"
"d11=30m"
"d13=4u"


1 ze
  d11 pl12:f2 
  d11 cpd2:f2
2 30m
  d1
  p1*2 ph1
  p1*2 ph2 
  p1 ph1
  d4
  p1*3 ph3
  p1*2 ph4
  p1 ph3
  d4
  p1 ph5
  d13
  p1*2 ph6
  p1*2 ph7
  p1 ph6
  p1*3 ph7
  p1*2 ph6
  p1 ph7
  p1 ph8
  go=2 ph31
  30m mc #0 to 2 F0(zd)
  d11 do:f2
exit


ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
    2 2 2 2 3 3 3 3 0 0 0 0 1 1 1 1
ph2=2 2 2 2 3 3 3 3 0 0 0 0 1 1 1 1
    0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph3=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
    0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
    2 2 2 2 3 3 3 3 0 0 0 0 1 1 1 1
    2 2 2 2 3 3 3 3 0 0 0 0 1 1 1 1
ph4=2 2 2 2 3 3 3 3 0 0 0 0 1 1 1 1
    2 2 2 2 3 3 3 3 0 0 0 0 1 1 1 1
    0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
    0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph5=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph6=1 0 3 2
ph7=3 2 1 0
ph8=0 3 2 1
ph31=0 1 2 3 2 3 0 1 0 1 2 3 2 3 0 1
     2 3 0 1 0 1 2 3 2 3 0 1 0 1 2 3


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CC))
;d11: delay for disk I/O                             [30 msec]
;d13: short delay                                    [4 usec]
;cnst3: = J(CC)
;ns: 16 * n, total number of scans: NS * TD0
;ds: 16
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
