;inadgpqfsp
;avance-version (12/01/11)
;2D INADEQUATE
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"d4=1s/(cnst3*4)"
"d11=30m"
"d12=20u"


"in0=inf1"

"d0=3u"


"DELTA=d4-p13/2"


1 ze
  d11 pl12:f2 
  d11 cpd2:f2
2 d1
3 d12 pl1:f1
  50u UNBLKGRAD
  
  p1 ph1
  DELTA
  4u
  (p13:sp5 ph2)
  4u
  DELTA pl1:f1
  p1 ph2
  d0
  p16:gp1
  d16
  p1 ph2
  p16:gp2
  d16
  4u BLKGRAD
  go=2 ph31
  d1 mc #0 to 2 F1QF(caldel(d0, +in0))
  d11 do:f2
exit


ph1=0 2
ph2=0
ph31=0 2


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp5: f1 channel - shaped pulse (180degree)
;spnam5: Crp60comp.4 (Crp80comp.4)
;p1 : f1 channel -  90 degree high power pulse
;p13: f1 channel - 180 degree shaped pulse
;     = 2msec for Crp60comp.4 (Crp80comp.4)
;p16: homospoil/gradient pulse                         [1 msec]
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CC))
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;cnst3: = J(CC)
;inf1: 1/SW(DQ-X) = DW(X)
;in0: 1/SW(DQ-X) = DW(X)
;nd0: 1
;ns: 32 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 40%
;gpz2: 80%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
