;inadgpsp1d
;avance-version (13/08/07)
;1D INADEQUATE
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"d4=1s/(cnst3*4)"
"d11=30m"

"DELTA1=d4-p13/2"
"DELTA2=p16+d16"
"DELTA3=p16+d16+de-p1*2/PI+4u"

1 ze
  d11 pl12:f2 
  d11 cpd2:f2
2 30m
  d1 pl1:f1
  50u UNBLKGRAD

  p1 ph1
  DELTA1
  4u
  (p13:sp5 ph2)
  4u
  DELTA1 pl1:f1
  p1 ph3

  DELTA2
  (p13:sp5 ph5)
  p16:gp1
  d16 pl1:f1

  p1 ph4
  DELTA3
  (p13:sp5 ph5)
  p16:gp2
  d16
  4u BLKGRAD

  go=2 ph31
  30m mc #0 to 2 F0(zd)
  d11 do:f2
exit


ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
    2 2 2 2 3 3 3 3 0 0 0 0 1 1 1 1
ph2=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
    0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
    2 2 2 2 3 3 3 3 0 0 0 0 1 1 1 1
    2 2 2 2 3 3 3 3 0 0 0 0 1 1 1 1
ph3=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph4=0 1 2 3
ph5=0
ph31=0 1 2 3 2 3 0 1 0 1 2 3 2 3 0 1
     2 3 0 1 0 1 2 3 2 3 0 1 0 1 2 3


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp5: f1 channel - shaped pulse (180degree)
;spnam5: Crp60comp.4  (Crp80comp.4)
;p1 : f1 channel -  90 degree high power pulse
;p13: f1 channel - 180 degree shaped pulse
;     = 2msec for Crp60comp.4 (Crp80comp.4)
;p16: homospoil/gradient pulse                         [1 msec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CC))
;d11: delay for disk I/O                             [30 msec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;cnst3: = J(CC)
;ns: 16 * n, total number of scans: NS * TD0
;ds: 32
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 40%
;gpz2: 80%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
