;inadphsp
;avance-version (16/04/04)
;2D INADEQUATE
;phase sensitive
;
;phase cycling according to:
;   M. Bourdonneau & B. Ancian, J. Magn. Reson. 132, 316-327 (1998)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"d4=1s/(cnst3*4)"
"d11=30m"


"in0=inf1"

#   ifdef LABEL_D0
"d0=3u"
#   else
"d0=in0/2-p1*4/3.1416"
#   endif /*LABEL_D0*/


"DELTA=d4-p13/2"


1 ze
  d11 pl12:f2 
  d11 cpd2:f2
2 d1
3 p1 ph1
  DELTA
  4u
  (p13:sp5 ph2)
  4u
  DELTA pl1:f1
  p1 ph1
  d0
  p1 ph3
  go=2 ph31
  d1 mc #0 to 2 F1PH(calph(ph1, +45) & calph(ph2, +45), caldel(d0, +in0))
  d4 do:f2
exit


ph1=(8) 0 0 4 4 0 0 4 4 2 2 6 6 2 2 6 6
        4 4 0 0 4 4 0 0 6 6 2 2 6 6 2 2
ph2=(8) 4 0 0 4 4 0 0 4 6 2 2 6 6 2 2 6
        0 4 4 0 0 4 4 0 2 6 6 2 2 6 6 2
ph3=    0 1 2 3 1 0 3 2 2 3 0 1 3 2 1 0
ph31=   0 3 2 1 3 0 1 2


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp5: f1 channel - shaped pulse (180degree)
;spnam5: Crp60comp.4 (Crp80comp.4)
;p1 : f1 channel -  90 degree high power pulse
;p13: f1 channel - 180 degree shaped pulse
;     = 2msec for Crp60comp.4 (Crp80comp.4)
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CC))
;d11: delay for disk I/O                             [30 msec]
;cnst3: = J(CC)
;inf1: 1/SW(DQ-X) = DW(X)
;in0: 1/SW(DQ-X) = DW(X)
;nd0: 1
;ns: 32 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


                                          ;preprocessor-flags-start
;LABEL_D0: if calculation of d0 leads to negative values use
;             option -DLABEL_D0 (eda: ZGOPTNS) to start with d0=3u
                                          ;preprocessor-flags-end


;Processing (only if option LABEL_D0 not used)

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
