;inadqf
;avance-version (12/01/11)
;2D INADEQUATE
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d4=1s/(cnst3*4)"
"d11=30m"


"in0=inf1"

"d0=3u"


1 ze
  d11 pl12:f2 
  d11 cpd2:f2
2 d1
3 p1 ph1
  d4
  p2 ph2
  d4
  p1 ph1
  d0
  p1 ph3
  go=2 ph31
  d1 mc #0 to 2 F1QF(caldel(d0, +in0))
  d4 do:f2
exit


ph1=(8) 0 3 2 1 4 7 6 5 2 5 4 3 6 1 0 7
	3 6 5 4 7 2 1 0 1 4 3 2 5 0 7 6
ph2=(8) 0 3 2 1 4 7 6 5 2 5 4 3 6 1 0 7
	3 6 5 4 7 2 1 0 1 4 3 2 5 0 7 6
	4 7 6 5 0 3 2 1 6 1 0 7 2 5 4 3 
	7 2 1 0 3 6 5 4 5 0 7 6 1 4 3 2
ph3=    0 1 2 3 
ph31=   0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
	1 1 1 1 1 1 1 1 3 3 3 3 3 3 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CC))
;d11: delay for disk I/O                             [30 msec]
;cnst3: = J(CC)
;inf1: 1/SW(DQ-X) = DW(X)
;in0: 1/SW(DQ-X) = DW(X)
;nd0: 1
;ns: 32 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
