;inadqfsy
;avance-version (12/01/11)
;2D INADEQUATE
;using split t1 domain to give symmetric, COSY-like spectrum
;
;D.L. Turner, J. Magn. Reson. 49, 175 (1982)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d4=1s/(cnst3*4)"
"d11=30m"


"in0=inf1"

"d0=3u"


1 ze
  d11 pl12:f2 
  d11 cpd2:f2
2 d1
3 p1 ph1
  d4
  p2 ph2
  d4
  p1 ph1
  d0
  p1 ph3
  d0
  go=2 ph31
  d1 mc #0 to 2 F1QF(caldel(d0, +in0))
  d4 do:f2
exit


ph1=(8) 0 4 2 6 3 7 1 5 3 7 5 1 6 2 4 0
	2 6 4 0 5 1 3 7 1 5 3 7 4 0 2 6
ph2=(8) 0 4 2 6 3 7 1 5 3 7 5 1 6 2 4 0
	2 6 4 0 5 1 3 7 1 5 3 7 4 0 2 6
	4 0 6 2 7 3 5 1 7 3 1 5 2 6 0 4
	6 2 0 4 1 5 7 3 5 1 7 3 0 4 6 2
ph3=    0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
	2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CC))
;d11: delay for disk I/O                             [30 msec]
;cnst3: = J(CC)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(1 * SW(X)) = 2 * DW(X)
;nd0: 1
;ns: 32 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
