;indecobimlph
;avance-version (12/01/11)
;inverse dept-cosy
;2D proton detected dept-based editing (DEPT-HMQC) via
;   heteronuclear zero and double quantum coherence
;   using BIRD sequence
;with homonuclear Hartman-Hahn transfer using MLEV17 sequence
;   for mixing
;using two power levels for excitation and spinlock
;phase sensitive
;with decoupling during acquisition
;
;H. Kessler, P. Schmieder & M. Kurz, J. Magn. Reson 85, 400-405 (1989)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p5=p6*.667"
"p7=p6*2"
"d2=1s/(cnst2*4)"
"d12=20u"


"d0=3u"

"in0=inf1/2"


"DELTA=p2+d0*2-p0"
"DELTA1=p4-p3"


"SCALEF=p7*2/p5"
"FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF"
"l1=FACTOR1*SCALEF"


1 ze
2 d1 do:f2
3 d12 pl1:f1
  (p1 ph1)
  d2 pl2:f2
  (center (p2 ph1) (p4 ph7):f2 )
  d2
  (p1 ph2)
  d7
  (p3 ph8):f2
  (p1 ph3)
  d2
  DELTA
  (p2 ph4) (p3 ph9):f2
  DELTA
  d2
  (p0 ph5) 
  (p4 ph10):f2
  d2
  d0
  (p2 ph6)
  d0
  (p3 ph11):f2
  DELTA1
  d2 pl10:f1
  (p17 ph26)
						;begin MLEV17
4 (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p6 ph24 p7 ph25 p6 ph24) 
  (p5 ph23)
  lo to 4 times l1
						;end MLEV17
  (p17 ph26)
  d12 pl12:f2
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 F1PH(calph(ph9, +90), caldel(d0, +in0))
exit


ph1=0
ph2=2
ph3=0
ph4=1
ph5=1
ph6=0
ph7=0
ph8=0 0 0 0 2 2 2 2
ph9=0 2
ph10=1
ph11=0 0 2 2
ph22=0 
ph23=1 
ph24=2 
ph25=3 
ph26=1 
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;p0 : f1 channel -  60, 90, 120 or 180 degree high power pulse
;                   60 degree - XH positive, XH2, XH3 negative
;                   90 degree - XH2 only
;                  120 degree - XH3 positive, XH, XH2 negative
;                  180 degree - XH2 positive, XH, XH3 negative
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p5 : f1 channel -  60 degree low power pulse
;p6 : f1 channel -  90 degree low power pulse
;p7 : f1 channel - 180 degree low power pulse
;p17: f1 channel - trim pulse                             [2.5 msec]
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)
;d7 : delay for inversion recovery
;     optimize to give null for protons bound to C-12
;d9 : TOCSY mixing time
;d12: delay for power switching                      [20 usec]
;cnst2: = J(XH)
;l1: loop for MLEV cycle: (((p6*64) + p5 ) * l1) + (p17*2) = mixing time
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
