;indecoph
;avance-version (12/01/11)
;inverse dept-cosy
;2D proton detected dept-based editing (DEPT-HMQC) via
;   heteronuclear zero and double quantum coherence
;phase sensitive
;with decoupling during acquisition
;
;H. Kessler, P. Schmieder & M. Kurz, J. Magn. Reson 85, 400-405 (1989)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d2=1s/(cnst2*2)"


"d0=3u"

"in0=inf1/2"


"DELTA=p2+d0*2-p0"
"DELTA1=p4-p3"


1 ze
2 d1 do:f2
3 (p1 ph1)
  d2 pl2:f2
  (p2 ph2) (p3 ph5):f2
  d2
  DELTA
  (p0 ph3) (p4 ph6):f2
  DELTA
  d2
  d0
  (p2 ph4)
  d0
  (p3 ph7):f2
  DELTA1
  d2 pl12:f2
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 F1PH(calph(ph5, +90), caldel(d0, +in0))
exit


ph1=0
ph2=1
ph3=1
ph4=0
ph5=0 2
ph6=1
ph7=0 0 2 2
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p0 : f1 channel -  60, 90, 120 or 180 degree high power pulse
;                   60 degree - XH positive, XH2, XH3 negative
;                   90 degree - XH2 only
;                  120 degree - XH3 positive, XH, XH2 negative
;                  180 degree - XH2 positive, XH, XH3 negative
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
