;inepin
;avance-version (12/01/11)
;INEPT-INADEQUATE
;
;O.W. Sorensen, R. Freeman, T.A. Frenkiel, T.H. Mareci & R. Schuck,
;    J. Magn. Reson. 46, 180 (1982)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d3=1s/(cnst2*cnst11)"
"d4=1s/(cnst3*4)"
"d12=20u"
"d13=4u"
"d21=1s/(cnst2*4)"


"DELTA1=d4-d3"


1 ze
2 30m do:f2 
  d1
  d12 pl2:f2
  (p3 ph1):f2
  d21
  (center (p4 ph2):f2 (p2 ph4) )
  d21
  (p3 ph3):f2 (p1 ph5)
  d3 pl12:f2
  DELTA1 cpd2:f2
  p2 ph6
  d4
  p1 ph7
  d13
  p1 ph8
  go=2 ph31
  30m do:f2 mc #0 to 2 F0(zd)
exit


ph1= 0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph2= {0}*64 {2}*64
ph3= 1
ph4= {0}*128 {2}*128
ph5= {{0}*16}^1^2^3
ph6= {{0 2}*8}^1^2^3
ph7= {{1}*16}^1^2^3
ph8= {{{0}*2}^2^3^1}^2^2^0
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(3J(XH)) for all multiplicities
;d4 : 1/(4J(XX))
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;d21: 1/(4J(XH))
;cnst2: = J(XH)
;cnst3: = J(XX)
;cnst11: = 3 for all multiplicities
;ns: 64 * n, total number of scans: NS * TD0
;ds: 16
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
