;ineptrdsp
;avance-version (12/01/11)
;INEPT for non-selective polarization transfer
;with decoupling during acquisition
;using shaped pulses for 180degree pulses on f1 - channel
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"p4=p3*2"
"d3=1s/(cnst2*cnst11)"
"d4=1s/(cnst2*4)"
"d12=20u"


"DELTA1=d4-cnst17*p13/2"
"DELTA2=d3-cnst17*p13/2"


1 ze 
2 30m do:f2 
  d1
  d12 pl2:f2 
  (p3 ph1):f2 
  4u
  DELTA1 pl0:f1
  (center (p4 ph2):f2 (p13:sp5 ph4) )
  4u
  DELTA1 pl1:f1
  (p3 ph3):f2 (p1 ph5) 
  4u
  DELTA2 pl0:f1
  (center (p4 ph2):f2 (p13:sp5 ph6) )
  4u
  DELTA2 pl12:f2
  go=2 ph31 cpd2:f2
  30m do:f2 mc #0 to 2 F0(zd)
exit


ph1=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph2=0 2 
ph3=1 1 3 3
ph4=0 2 
ph5=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph6=0 2 0 2 1 3 1 3
ph31=0 0 2 2 1 1 3 3


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp5: f1 channel - shaped pulse (180degree)
;spnam5: Crp60comp.4
;p1 : f1 channel -  90 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p13: f1 channel - 180 degree shaped pulse
;     = 2msec for Crp60comp.4
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(XH))  XH, XH2, XH3 positive
;     1/(4J(XH))  XH only
;     1/(3J(XH))  XH, XH3 positive, XH2 negative
;d4 : 1/(4J(XH))
;d12: delay for power switching                      [20 usec]
;cnst2: = J(XH)
;cnst11: 6  XH, XH2, XH3 positive
;        4  XH only
;        3  XH, XH3 positive, XH2 negative
;cnst17: = -0.5 for Crp60comp.4
;ns: 4 * n, total number of scans: NS * TD0
;ds: 16
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence

;cnst17: Factor to compensate for coupling evolution during a pulse
;       (usually +1). A positive factor indicates that coupling 
;       evolution continues during the pulse, whereas a negative 
;       factor is necessary if the coupling is (partially) refocussed.



;$Id:$
