;ineptrl2
;avance-version (12/01/11)
;X-relayed H,X-COSY
;for correlation of quaternary carbons with neighboured protonated
;   carbons via carbon-carbon polarization transfer
;with suppression of signals of protonated carbons
;for 2D version see hxxco
;
;H. Kessler, W. Bermel & C. Griesinger, J. Magn. Reson. 62, 573 (1985)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d2=1s/(cnst2*2)"
"d3=1s/(cnst2*cnst11)"
"d4=1s/(cnst3*4)"
"d12=20u"
"d21=1s/(cnst2*4)"


"DELTA1=d4-d3"


1 ze
2 30m do:f2 
  d1
  d12 pl2:f2
  (p3 ph1):f2
  d21
  (center (p4 ph2):f2 (p2 ph4) )
  d21
  (p3 ph3):f2 (p1 ph5)
  d3 pl12:f2
  DELTA1 cpd2:f2
  p2 ph6
  d4
  p1 ph7
  d2 do:f2
  go=2 ph31 cpd2:f2
  30m do:f2 mc #0 to 2 F0(zd)
exit


ph1= 0 2 
ph2= 0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3= 1 3 3 1 3 1 1 3 
ph4= 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 
ph5= 0 0 0 0 2 2 2 2
ph6= 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 
ph7= 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph31=0 0 2 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d3 : 1/(3J(XH)) for all multiplicities
;d4 : 1/(4J(XX))
;d12: delay for power switching                      [20 usec]
;d21: 1/(4J(XH))
;cnst2: = J(XH)
;cnst3: = J(XX)
;cnst11: = 3 for all multiplicities
;ns: 128 * n, total number of scans: NS * TD0
;ds: 16
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
