;jresdcqf
;avance-version (12/01/11)
;homonuclear J-resolved correlation
;with decoupling on f2 - channel
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d11=30m"


"in0=inf1/2"

"d0=3u"


1 ze
  d11 pl12:f2 
  d11 cpd2:f2
2 d1
3 p1 ph1
  d0
  p2 ph2
  d0
  go=2 ph31
  d1 mc #0 to 2 F1QF(caldel(d0, +in0))
  d11 do:f2
exit


ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph2=0 2 1 3 1 3 2 0 1 3 2 0 2 0 3 1
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;inf1: 1/w, w = max. width of multiplet
;in0: 1/(2 * w), w = max. width of multiplet
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
