;jresgpph
;avance-version (18/08/09)
;homonuclear J-resolved 2D correlation
;phase sensitive
;
;A.J. Pell & J. Keeler, J. Magn. Reson. 189, 293-299 (2007)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"d11=30m"


"in0=inf1/2"

"d0=3u"


"TAU1=p1*2/PI+4u"
"TAU2=d16+de"


"l0=0"


"acqt0=0"
baseopt_echo


1 ze
2 d11
3 d1 pl1:f1
  50u UNBLKGRAD
  p1 ph2

  if "l0 %2 == 0"
     {
     4u
     (p47:sp34 ph3):f1 (p47:gp0)
     d16
     TAU1
     (p44:sp30 ph1)
     TAU2
     d0
     (p44:sp30 ph1)
     d0
     }
  else
     {
     4u
     (p44:sp30 ph1)
     TAU1
     d0
     (p44:sp30 ph1)
     d0
     TAU2
     (p47:sp34 ph3):f1 (p47:gp0)
     d16
     }

  4u  BLKGRAD
  go=2 ph31
  d11 mc #0 to 2 
     F1EA(calclc(l0, 1), caldel(d0, +in0))
exit


ph1=0
ph2=0
ph3=0 1 2 3
ph31=0 2


;pl1 : f1 channel - power level for pulse (default)
;sp30: f1 channel - shaped pulse 180 degree (Bip720,50,20.1)
;sp34: f1 channel - shaped pulse 180 degree (Rsnob.1000)
;p1 : f1 channel -  90 degree high power pulse
;p44: f1 channel - 180 degree shaped pulse for refocussing
;                      Bip720,50,20.1            (200us at 600.13 MHz)
;p47: f1 channel - 180 degree shaped pulse             [20-40ms at 600.13 MHz
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;inf1: 1/w, w = max. width of multiplet
;in0: 1/(2 * w), w = max. width of multiplet
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: echo-antiecho


;for z-only gradients:
;gpz0: 2%

;use gradient files:
;gpnam0: RECT.1



;$Id:$
