;jresgpprqf
;avance-version (12/01/11)
;homonuclear J-resolved 2D correlation
;with presaturation during relaxation delay
;using gradients
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>


"p2=p1*2"
"d11=30m"
"d12=20u"


"in0=inf1/2"

"d0=3u"


1 ze
2 d11 
3 d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  50u UNBLKGRAD
  p1 ph1
  4u
  d0
  p16:gp1
  d16
  p2 ph2
  4u
  p16:gp2
  d16
  d0 BLKGRAD
  go=2 ph31
  d11 mc #0 to 2 F1QF(caldel(d0, +in0))
exit


ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph2=0 2 1 3 1 3 2 0 1 3 2 0 2 0 3 1
ph29=0
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel -  180 degree high power pulse
;p16: homospoil/gradient pulse                       [1 msec]
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;inf1: 1/w, w = max. width of multiplet
;in0: 1/(2 * w), w = max. width of multiplet
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF


;use gradient ratio:    gp 1 : gp 2
;                         10 :   10

;for z-only gradients:
;gpz1: 10%
;gpz2: 10%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
