;lc1pncwgpps
;avance-version (17/02/22)
;1D version of noesyprph using presaturation during relaxation delay 
;   and mixing time
;using shaped pulse for off-resonance presaturation
;with cw-decoupling on f2 - channel during acquisition
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<lcnmr>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"d11=30m"
"d12=20u"


"p0=p1*cnst12"


"if (d1/p18 < 1) {l6=1;} else {l6=d1/p18;}"

"l7=trunc(d8/p18)"

"DELTA=d8-(p18*l7)"


"acqt0=-p0*2/3.1416"


1 ze
  d12 pl21:f2
2 30m do:f2

#   ifdef FLAG_BLK
  4u BLKGRAD
#   else
  4u
#   endif /*FLAG_BLK*/

3 p18:sp6:f1 ph29
  4u
  lo to 3 times l6
  50u UNBLKGRAD
  p16:gp1
  d16 pl1:f1
  p1 ph1
  4u
  p1 ph2
  d12 cw:f2
  DELTA
4 p18:sp6:f1 ph29
  4u
  lo to 4 times l7
  p16:gp2
  d16 pl1:f1
  
#   ifdef FLAG_BLK
  4u
#   else
  4u BLKGRAD
#   endif /*FLAG_BLK*/

  p0 ph3
  go=2 ph31
  30m do:f2 mc #0 to 2 F0(zd)

#   ifdef FLAG_BLK
  4u BLKGRAD
#   else
  4u
#   endif /*FLAG_BLK*/

exit


ph1=0 2 
ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3=0 0 2 2 1 1 3 3
ph29=0
ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3


;pl1 : f1 channel - power level for pulse (default)
;pl21: f2 channel - power level for decoupling 
;sp6: f1 channel - shaped pulse for presaturation
;p0 : for any flip angle
;p1 : f1 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;p18: f1 channel - presaturation using shaped pulse
;d1 : relaxation delay; 1-5 * T1                  [ca. 1-2sec]
;d8 : mixing time                                [ca. 80 msec]
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;cnst12: as multiplier for flip angle (1 = 90o)            [1]
;l6: p18 * l6 = total duration of presaturation
;                  during relaxation delay           [16]
;l7: p18 * l7 = total duration of presaturation
;                  during mixing time                [1]
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4

;use 100msec pulse of square shape defined by 1000 points


;for z-only gradients:
;gpz1: 50%
;gpz2: -10%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



                                          ;preprocessor-flags-start
;FLAG_BLK: for BLKGRAD before d1 rather than go
;             option -DFLAG_BLK: (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
