;lc1prf2
;avance-version (12/01/11)
;with double presaturation during relaxation delay
;presaturation using f1 and f2 - channel
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<lcnmr>


#include <Avance.incl>


"d12=20u"
"d13=4u"


"acqt0=-p1*2/3.1416"


1 ze
  d12 pl21:f2
2 30m
  d12 pl9:f1
  d1 cw:f1 ph29 cw:f2 ph29
  d13 do:f1 do:f2
  d12 pl1:f1
  p1 ph1
  go=2 ph31
  30m mc #0 to 2 F0(zd)
exit


ph1=0 2 2 0 1 3 3 1
ph29=0
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;pl21: f2 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1                  [ca. 1-2sec]
;d12: delay for power switching                     [20 usec]
;d13: short delay                                    [4 usec]
;ns: 4 * n, total number of scans: NS * TD0
;ds: 4



;$Id:$
