;lc2
;avance-version (12/01/11)
;pseudo-2D-sequence for lc-nmr on flow detection
;without solvent suppression
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<lcnmr>


#include <Avance.incl>


"d11=30m"


"acqt0=-p1*2/3.1416"


1 ze

#   ifdef WAITFORSTART
  autosuspend
#   endif

2 d11
3 d1
  p1:f1 ph1
  go=2 ph31
  d11 wr #0 if #0 zd 
  lo to 3 times td1
exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;ns: 4 * n
;ds: 16
;td1: number of increments along the chromatographic time axis


                                          ;preprocessor-flags-start
;WAITFORSTART: Start experiment with option -DWAITFORSTART (eda: ZGOPTNS)
;                 Acquisition waits for 'resume' command for sychronisation
;                 with chromatography
                                          ;preprocessor-flags-end



;$Id:$
