;lc2wetdc
;avance-version (12/01/11)
;WET solvent suppression with shape pulse
;   and C-13 decoupling on f2 during WET and AQ
;for LC isocratic runs
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<lcnmr>


#include <Avance.incl>
#include <Grad.incl>


define delay WETWAIT


"d11=30m"
"d12=20u"
"d13=4u"
"d16=2m"


"WETWAIT=10m-d16-d12"


"acqt0=-(p1*6/3.1416)-4u"


1 ze

#   ifdef WAITFORSTART
  autosuspend
#   endif

  d11 pl14:f2
2 d11
3 d12 BLKGRAD
  d1 do:f2
  50u UNBLKGRAD
  d12 pl0:f1
  d13 cpd2:f2
  (p11:sp7 ph5):f1
  4u
  p16:gp21
  d16 pl0:f1
  (p11:sp8 ph6):f1
  4u
  p16:gp22
  d16 pl0:f1
  (p11:sp9 ph6):f1
  4u
  p16:gp23
  d16 pl0:f1
  (p11:sp10 ph6):f1
  4u do:f2
  p16:gp24
  d16
  WETWAIT pl1:f1
  p1 ph1
  4u
  p1 ph2
  4u
  p1 ph3
  4u
  p1 ph4
  go=2 ph31 cpd2:f2
  d11 wr #0 if #0 zd do:f2
  lo to 3 times td1
  d12 BLKGRAD
exit


ph1=1 3 3 1 2 0 0 2
ph2=2 0 2 0 3 1 3 1
ph3=3 1 1 3 0 2 2 0
ph4=0 2 0 2 1 3 1 3
ph5=0
ph6=1
ph29=0
ph31=0 2 0 2 1 3 1 3


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl14: f2 channel - power level for low power decoupling
;sp1: f1 channel - shaped pulse
;        powerlevel for 90 degree pulse 
;sp7: f1 channel - shaped pulse
;sp8: f1 channel - shaped pulse
;sp9: f1 channel - shaped pulse
;sp10:f1 channel - shaped pulse
;p1 : f1 channel -  90 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse                       [2msec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery          [2msec]
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;ns: 4 * n
;ds: 16
;td1: number of increments along the chromatographic time axis
;        (number of experiments)


;use gradient ratio:	gp21 : gp22 : gp23 : gp24
;                         80 :   40 :   20 :   10

;for z-only gradients:
;gpz21: 80%
;gpz22: 40%
;gpz23: 20%
;gpz24: 10%

;use gradient files:   
;gpnam21: SMSQ10.100
;gpnam22: SMSQ10.100
;gpnam23: SMSQ10.100
;gpnam24: SMSQ10.100


;use power levels		sp7        sp8        sp9        sp10
;			sp1	+0.87      -1.04      +2.27      -5.05


                                          ;preprocessor-flags-start
;WAITFORSTART: Start experiment with option -DWAITFORSTART (eda: ZGOPTNS)
;                 Acquisition waits for 'resume' command for sychronisation
;                 with chromatography
                                          ;preprocessor-flags-end



;$Id:$
