;lcjrescwfdprqf
;avance-version (12/01/11)
;homonuclear J-resolved 2D correlation
;with double presaturation using f1 and f3 - channel
;with cw-decoupling on f2 - channel during acquisition
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<lcnmr>


#include <Avance.incl>


"p2=p1*2"
"d11=30m"
"d12=20u"
"d13=4u"


"in0=inf1/2"

"d0=3u"


1 ze
  d12 pl21:f2 pl22:f3
2 d11 do:f2
3 d12 pl9:f1
  d1 cw:f1 ph29 cw:f3 ph29
  d13 do:f1 do:f3
  d12 pl1:f1
  p1 ph1
  d0
  p2 ph2
  d0
  go=2 ph31 cw:f2
  d11 do:f2 mc #0 to 2 F1QF(caldel(d0, +in0))
exit


ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph2=0 2 1 3 1 3 2 0 1 3 2 0 2 0 3 1
ph29=0
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;pl21: f2 channel - power level for decoupling 
;pl22: f3 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel -  180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1                  [ca. 1-2sec]
;d11: delay for disk I/O                              [30msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                     [4 usec]
;inf1: 1/w, w = max. width of multiplet
;in0: 1/(2 * w), w = max. width of multiplet
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF

;resolution in F1 must be multiple of resolution in F2
;   FIDRES(t1) * n = FIDRES(t2)



;$Id:$
