;mesqtqhmqc3d
;avance-version (26/01/30)
; 1H/13C correlation using HMQC transfer
; 
; for measuring methyl group order paramaters via build up of methyl 1H triple
; quantum magnetization relative to single quantum magnetization
; for highly deuterated, selectively 1H/13C methyl group labeled proteins
; water suppression using presaturation
; as pseudo3D
;
; Odd and even spectra correspond to single quantum (SQ) and triple quantum (TQ)
; magnetization present after a variable delay (given via a vd list). TD1 must be 
; set to 2 * number of vd list entries. Number of scans (ns) are set via loop 
; counter l3: SQ and TQ experiments are recorded with l3 * 16 (SQ) and l3 * 24 (TQ) 
; scans. FIDs are internally scaled by 1/ns, so peak intensities don't need to be 
; corrected for the number of scans prior to fitting. 
;
; use parameterset (MEHSQTQHMQC3D)
;
; H. Sun, L.E. Kay, V. Tugarinov, J Phys Chem B, 115(49), 14878-84 (2011)



;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

prosol relations=<triple>

#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>

"d2=1/(cnst2*2)"
"d3=1/(cnst2*8)"
"in10=inf2"
"d11=30m"

define list<delay> vd_list=<$VDLIST>

"p2=p1*2"
"p4=p3*2"
"p29=125u"

"d10=(in10/2)-p3*4/PI"
"d17=100u"

"DELTA1 = d2 - p1*2/PI - p16 - d16"
"DELTA2 = d3 - p19 - d16"   
"DELTA3 = d2 - 24u - p16 - d16 - p4 - de"
"acqt0=0"

"l11=0"
"l12=0"

baseopt_echo
scaleByNs
aqseq 312

1 ze
  d11

  if "td1 != vd_list.len*2" 
     {
     2u
     print "Warning: td1 is not equal to 2 times the number of vd list entries"
     }

2 d11 do:f2 pl10:f1

; change bewtween SQ (l11 modulo 2 = 0) and TQ (l11 modulo 2 = 1) for every point in TD1
if "l11 % 2 == 0" 
  {
  "ns=16*l3" 
  }
else {
  "ns=24*l3"  
  }

; iterate thorugh vd list entries every second point in TD1
 "l12=trunc(l11/2)"
 "DELTA5=vd_list[l12]/4-p3-p1*2/PI"
 "DELTA6=vd_list[l12]/4-p3-p1*2/PI-p29-d17"
   
; purge residual 1H magnetization
  40m cw:f1 ph2
  4u do:f1
  p16:gp5
  d16 pl1:f1
  (p1 ph1):f1
  p16:gp6
  d16 fq=0:f1 pl9:f1 pl2:f2  

; recovery delay              
  d1 cw:f1 ph1         
  4u do:f1                    

; purge 13C magnetization
  20u UNBLKGRAD        
  (p3 ph1):f2              
  p16:gp1               
          
  d16  pl1:f1 fq=cnst22 (bf ppm):f1              

;excitation
if "l11 % 2 == 0" 
  {
   (p1 ph21):f1  
  }
else {
  (p1 ph11):f1 
  }
                            
;relaxation delay
  DELTA5
  (p4 ph1):f2
  DELTA6
  p29:gp2
  d17
if "l11 % 2 == 0" 
  {
  (p2 ph21):f1  
  }
else {
  (p2 ph11):f1  
  }
  DELTA6
  p29:gp2
  d17
  (p4 ph1):f2
  DELTA5
if "l11 % 2 == 0" 
  {
  (p1 ph23):f1 
  }
else {
  (p1 ph12):f1
  (p1 ph13):f1
  }

; H -> C transfer
  p16:gp3                                        
  d16  
  DELTA1    

if "l11 % 2 == 0" 
  {
  (p3 ph24):f2 
  }
else {
  (p3 ph14):f2 
  }
   
; purge element to eliminate L1/3
  p19:gp4    
  d16       
  DELTA2
  (center (p2 ph1):f1 (p4 ph1):f2)                        
  p19:gp4                          
  d16                                
  DELTA2

if "l11 % 2 == 0" 
  {
  (p3 ph25):f2 
  }
else {
  (p3 ph15):f2  
  }

;13C chem. shift evolution
  (center(p1 ph2 p2 ph1 p1 ph2):f1  (d10):f2)

; back-transfer
  (p3 ph16):f2    
  (p2 ph1):f1                        
  p16:gp3                               
  d16 
  20u BLKGRAD
  DELTA3           
  (p3 ph1):f2     
if "l11 % 2 == 0" 
  {
  (p3 ph27):f2   
  }
else {
  (p3 ph17):f2   
  }

  4u pl12:f2    

; acquisition                     
if "l11 % 2 == 0" 
  {
  go=2 ph30 cpd2:f2
  }
else {
  go=2 ph31 cpd2:f2
  }
  d11 do:f2 mc #0 to 2
   F1QF(calclc(l11,1))
   F2PH(calph(ph16, -90), caldel(d10, +in10))

exit

ph1= 0
ph2= 1
ph11= (12) 0 2 4 6 8 10
ph12= (12) 3 5 7 9 11 1
ph13=1 1 1 1 1 1 3 3 3 3 3 3
ph14=0 0 0 0 0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2 2 2 2 2
ph15=1 1 1 1 1 1 3 3 3 3 3 3
ph16=0
ph17=0 0 0 0 0 0 2 2 2 2 2 2
ph21=0 2
ph23=1 1 3 3
ph24=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph25=1 1 1 1 3 3 3 3
ph27=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph31=0 2 0 2 0 2 0 2 0 2 0 2 2 0 2 0 2 0 2 0 2 0 2 0         
ph30=0 2 0 2 0 2 0 2 2 0 2 0 2 0 2 0    

;pl1 : f1 channel - power level for pulse (default)              
;pl2 : f2 channel - power level for pulse (default)   
;pl9 : f1 channel - power level for presaturation               
;pl10: f1 channel - power level for purge pulse  
;pl12: f2 channel - power level for CPD/BB decoupling
;pl15: f2 channel - power level for CPMG pulse train 

;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p9 : f2 channel -  90 degree low power pulse for CPMG train   

;p16: homospoil/gradient pulse   [1 ms]
;p19: homospoil/gradient pulse 2 [600 us]
;p29: homospoil/gradient pulse 3 [125 us]

;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)CH [4 ms]
;d3 : 1/(8J)CH [1 ms]
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery [200 us]

;cpd2 : 13C decoupling according to program defined by cpdprg2
;pcpd2: f2 channel -  90 degree pulse for decoupling sequence

;d10: incremented delay   
;in10: 1/(SW(x))=DW(X)

;l3 : ns = l3 * 16 (for SQ) and l3 * 24 (for TQ) 
;l11 : internal counter used for SQ/TQ differentiation
;l12 : internal counter used for vd list

;cnst2: = J(CH) in Hz [125]
;cnst22: Center Hmethyl region (in ppm)  [~1]

;ns: set via l3
;ds: >=64

;FnMODE: QF(no freq) in F1
;FnMODE: States-TPPI in F2

;for z-only gradients:
;gpz1: 20%
;gpz2: 15%
;gpz3: 25%
;gpz4: 35%
;gpz5: -30%
;gpz6: 45%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.32
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100

;Processing

;PHC0(F2): 90
;PHC1(F2): -180
;FCOR(F2): 1

;$Id:$
