;mlevetgp
;avance-version (12/01/11)
;homonuclear Hartman-Hahn transfer using MLEV17 sequence
;   for mixing
;using two power levels for excitation and spinlock
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;
;A. Bax & D.G. Davis, J. Magn. Reson. 65, 355-360 (1985)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p5=p6*.667"
"p7=p6*2"
"d11=30m"
"d12=20u"


"in0=inf1"

"d0=3u"


"DELTA=p16+d16+d0-p1*2/3.1416"
"DELTA1=p16+d16+8u"

"SCALEF=p7*2/p5"
"FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF"
"l1=FACTOR1*SCALEF"


1 ze
2 d11
3 d1 pl1:f1
  50u UNBLKGRAD
  p1 ph1
  DELTA
  p2 ph2
  d0
  p16:gp1*EA
  d16 pl10:f1
  (p17 ph26)
						;begin MLEV17
4 (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p5 ph23)
  lo to 4 times l1 
						;end MLEV17
  (p17 ph26) 
  DELTA1 pl1:f1
  p2 ph2
  4u
  p16:gp2
  d16
  4u BLKGRAD
  go=2 ph31
  d11 mc #0 to 2 F1EA(calgrad(EA), caldel(d0, +in0) & calph(ph1, +180) & calph(ph31, +180))
exit


ph1=0 2 2 0 1 3 3 1
ph2=0 2 0 2 1 3 1 3
ph22=3 1 3 1 0 2 0 2
ph23=0 2 0 2 1 3 1 3
ph24=1 3 1 3 2 0 2 0
ph25=2 0 2 0 3 1 3 1
ph26=0 2 0 2 1 3 1 3
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p5 : f1 channel -  60 degree low power pulse
;p6 : f1 channel -  90 degree low power pulse
;p7 : f1 channel - 180 degree low power pulse
;p16: homospoil/gradient pulse
;p17: f1 channel - trim pulse                        [2.5 msec]
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;l1: loop for MLEV cycle: (((p6*64) + p5) * l1) + (p17*2) = mixing time
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: echo-antiecho


;use gradient ratio:	gp 1 : gp 2
; 		          30 :   30

;for z-only gradients:
;gpz1: 30%
;gpz2: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
