;mlevgpph19
;avance-version (12/01/11)
;homonuclear Hartman-Hahn transfer using MLEV17 sequence
;   for mixing
;using two power levels for excitation and spinlock
;phase sensitive
;water suppression using 3-9-19 pulse sequence with gradients
;
;A. Bax & D.G. Davis, J. Magn. Reson. 65, 355-360 (1985)
;M. Piotto, V. Saudek & V. Sklenar, J. Biomol. NMR 2, 661 - 666 (1992)
;V. Sklenar, M. Piotto, R. Leppik & V. Saudek, J. Magn. Reson., 
;   Series A 102, 241 -245 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p5=p6*.667"
"p7=p6*2"
"d12=20u"


"in0=inf1"

"d0=in0/2-p1*2/3.1416-4u"


"SCALEF=p7*2/p5"
"FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF"
"l1=FACTOR1*SCALEF"


"TAU=p1*2/3.1416-(p0-p27)*0.231-de+46u"


"acqt0=0"
baseopt_echo


1 ze 
2 d1 
3 d12 pl1:f1
  p1 ph1
  d0
  4u pl10:f1
  (p17 ph26)
						;begin MLEV17
4 (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p5 ph23)
  lo to 4 times l1 
						;end MLEV17
  (p17 ph26) 
  50u UNBLKGRAD
  p16:gp1
  d16 pl18:f1
  p27*0.231 ph4
  d19*2
  p27*0.692 ph4
  d19*2
  p27*1.462 ph4
  d19*2
  p27*1.462 ph5
  d19*2
  p27*0.692 ph5
  d19*2
  p0*0.231 ph5
  TAU
  p16:gp1
  d16
  4u BLKGRAD
  go=2 ph31
  d1 mc #0 to 2 F1PH(calph(ph1, +90), caldel(d0, +in0))
exit

  
ph1=0 2
ph4=0 0 1 1 2 2 3 3 
ph5=2 2 3 3 0 0 1 1
ph22=3
ph23=0
ph24=1
ph25=2
ph26=0
ph31=0 2 2 0 0 2 2 0 


;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl18: f1 channel - power level for 3-9-19-pulse (watergate)
;p0 : f1 channel -  90 degree pulse at pl18
;                      use for fine adjustment
;p1 : f1 channel -  90 degree high power pulse
;p5 : f1 channel -  60 degree low power pulse
;p6 : f1 channel -  90 degree low power pulse
;p7 : f1 channel - 180 degree low power pulse
;p16: homospoil/gradient pulse
;p17: f1 channel -  trim pulse                       [2.5 msec]
;p27: f1 channel -  90 degree pulse at pl18
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d19: delay for binomial water suppression
;     d19 = (1/(2*d)), d = distance of next null (in Hz)
;l1: loop for MLEV cycle: (((p6*64) + p5) * l1) + (p17*2) = mixing time
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ

;use gradient ratio:	gp 1
;			  20

;for z-only gradients:
;gpz1: 20%

;use gradient files:   
;gpnam1: SMSQ10.100


;Processing

;PHC0(F1): 180
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
