;mlevhmqcpr3d
;avance-version (12/01/11)
;TOCSY-HMQC
;3D sequence with
;   homonuclear Hartman-Hahn transfer using MLEV17 sequence
;      for mixing
;   H-1/X correlation via heteronuclear zero and double quantum
;      coherence 
;   using two power levels for excitation and spinlock
;phase sensitive (t1 and t2)
;with decoupling during acquisition
;with presaturation during relaxation delay
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p5=p6*.667"
"p7=p6*2"
"d2=1s/(cnst2*2)"
"d11=30m"
"d12=20u"
"d13=4u"


"d0=3u"
"d10=3u"

"in0=inf1/2"
"in10=inf2/2"


"DELTA=d0*2+p4+d12"


"SCALEF=p7*2/p5"
"FACTOR1=((d9-p17)/(p6*64+p5))/SCALEF"
"l1=FACTOR1*SCALEF"


aqseq 312


1 d11 ze
  d11 pl12:f2
2 d11 do:f2
3 d12 pl9:f1 pl2:f2
  d1 cw:f1 ph29
  d13 do:f1
  d12 pl1:f1
  p1 ph1
  DELTA
  p2 ph2
  d0
  (p4 ph7):f2
  d0
  d12 pl10:f1
  (p17 ph26)
						;begin MLEV17
5 (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p5 ph23)
  lo to 5 times l1 
						;end MLEV17
  d2 pl1:f1
  p3:f2 ph5
  d10
  p2 ph4
  d10
  p3:f2 ph6
  d2 pl12:f2
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 
     F1PH(calph(ph1, +90) & calph(ph2, +90) & calph(ph29, +90), caldel(d0, +in0)) 
     F2PH(calph(ph5, +90), caldel(d10, +in10))
exit


ph1=0 0 0 0 2 2 2 2
ph2=1
ph4=0
ph5=0 2
ph6=0 0 2 2
ph7=0

ph22=3
ph23=0
ph24=1
ph25=2
ph26=0

ph29=0
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p5 : f1 channel -  60 degree low power pulse
;p6 : f1 channel -  90 degree low power pulse
;p7 : f1 channel - 180 degree low power pulse
;p17: f1 channel - trim pulse                          [2.5 msec]
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/((2J)XH)
;d9 : TOCSY mixing time
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d13: short delay                                      [4 usec]
;cnst2: = J(XH)
;l1: loop for MLEV cycle: (((p6*64) + p5 ) * l1) + (p17) = mixing time
;inf1: 1/SW(H) = 2 * DW(H)
;inf2: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;in10: 1/(2 * SW(X)) = DW(X)
;nd10: 2
;ns: 8 * n
;ds: 32
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence

;for older datasets use AQORDER : 3 - 1 - 2



;$Id:$
