;mlevhsqcetgp3d
;avance-version (20/03/03)
;TOCSY-HSQC
;3D sequence with
;   homonuclear Hartman-Hahn transfer using MLEV17 sequence
;      for mixing
;   H-1/X correlation via double inept transfer
;      using sensitivity improvement
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho-TPPI gradient selection (t2)
;using two power levels for excitation and spinlock
;using trim pulses in inept transfer
;with decoupling during acquisition
;using shaped pulses for inversion on f2 - channel
;(use parameterset MLEVHSQCETGP3D)
;
;A. Bax & D.G. Davis, J. Magn. Reson. 65, 355-360 (1985)
;A.L. Davis, J. Keeler, E.D. Laue & D. Moskau, J. Magn. Reson. 98, 
;   207-216 (1992)
;A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance, J. Magn.
;   Reson. 93, 151-170 (1991)
;L.E. Kay, P. Keifer & T. Saarinen, J. Am. Chem. Soc. 114,
;   10663-5 (1992)
;J. Schleucher et al., Angew. Chem. 114(10), 1518 (1993)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p5=p6*.667"
"p4=p3*2"
"p7=p6*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"

#   ifdef LABEL_CN
"p22=p21*2"
#   else
#   endif /*LABEL_CN*/


"d0=3u"
"d10=3u"

"in0=inf1/2"
"in10=inf2/2"


"SCALEF=p7*2/p5"
"FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF"
"l1=FACTOR1*SCALEF"


"DELTA2=d4-p14/2-p16-8u"
"DELTA3=d4-p14/2"

#   ifdef LABEL_CN
"DELTA=larger(p14,p22)+d12+d0*2"
"DELTA1=p16+d16+larger(p2,p22)+d10*2"
#   else
"DELTA=p14+d12+d0*2"
"DELTA1=p16+d16+p2+d10*2"
#   endif /*LABEL_CN*/


aqseq 321


1 ze
  d11 pl12:f2
2 d1 do:f2
3 d12 pl0:f2
  (p1 ph7)
  DELTA
  (p2 ph8)
  d0

#   ifdef LABEL_CN
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
#   else
  (p14:sp3 ph1):f2
#   endif /*LABEL_CN*/

  d0
  d12 pl10:f1
  (p17 ph26)
						;begin MLEV17
6 (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p5 ph23)
  lo to 6 times l1 
						;end MLEV17
  (p17 ph26) 
  DELTA3 pl1:f1 pl0:f2
  4u
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  4u
  DELTA3 pl2:f2 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) (p3 ph3):f2
  d10 

#   ifdef LABEL_CN
  (center (p2 ph5) (p22 ph1):f3 )
#   else
  (p2 ph5)
#   endif /*LABEL_CN*/

  d10
  p16:gp1*EA
  d16
  (p4 ph4):f2
  DELTA1
  (ralign (p1 ph1) (p3 ph4):f2 )
  DELTA3
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  p16:gp2
  DELTA2 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 
     F1PH(calph(ph7, +90) & calph(ph8, +90), caldel(d0, +in0)) 
     F2EA(calgrad(EA), caldel(d10, +in10) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph5=0 0 2 2
ph6=0
ph7=0 0 0 0 2 2 2 2
ph8=1 1 1 1 3 3 3 3
ph22=0
ph23=1
ph24=2
ph25=3
ph26=1
ph31=0 2 0 2 2 0 2 0 2 0 2 0 0 2 0 2
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p5 : f1 channel -  60 degree low power pulse
;p6 : f1 channel -  90 degree low power pulse
;p7 : f1 channel - 180 degree low power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;p16: homospoil/gradient pulse
;p17: f1 channel - trim pulse                             [2.5 msec]
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d9 : TOCSY mixing time
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;l1: loop for MLEV cycle: (((p6*64) + p5) * l1) + (p17*2) = mixing time
;inf1: 1/SW(H) = 2 * DW(H)
;inf2: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;in10: 1/(2 * SW(X)) = DW(X)
;nd10: 2
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
