;mlevroesy3d
;avance-version (12/01/11)
;3D sequence with
;   homonuclear Hartman-Hahn transfer using MLEV17 sequence
;      for mixing
;   ROESY transfer using cw spinlock for mixing
;   using three power levels for excitation and spinlock
;phase sensitive (t1 and t2)
;
;A. Bax & D.G. Davis, J. Magn. Reson. 63, 207-213 (1985)
;A. Bax & D.G. Davis, J. Magn. Reson. 65, 355-360 (1985)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"p5=p6*.667"
"p7=p6*2"
"d11=30m"
"d12=20u"


"in0=inf1"
"in10=inf2"

"d0=in0/2-p1*2/3.1416-4u"
"d10=in10/2-4u"


"SCALEF=p7*2/p5"
"FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF"
"l1=FACTOR1*SCALEF"


aqseq 312


1 d11 ze
2 d11
3 d1 pl1:f1
  p1 ph1
  d0
  4u pl10:f1
  (p17 ph26)
						;begin MLEV17
5 (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p5 ph23)
  lo to 5 times l1 
						;end MLEV17
  (p17 ph26) 
  d10
  4u pl11:f1
  (p15 ph2)
  go=2 ph31
  d11 mc #0 to 2 
     F1PH(calph(ph1, +90), caldel(d0, +in0)) 
     F2PH(calph(ph1, +90) & calph(ph22, +90) & calph(ph23, +90) & calph(ph24, +90) & calph(ph25, +90) & calph(ph26, +90), caldel(d10, +in10))
exit 
  

ph1=0 0 2 2 1 1 3 3 2 2 0 0 3 3 1 1
ph2=0 2 0 2 1 3 1 3 2 0 2 0 3 1 3 1
ph22=3 3 3 3 0 0 0 0 1 1 1 1 2 2 2 2 
ph23=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3 
ph24=1 1 1 1 2 2 2 2 3 3 3 3 0 0 0 0 
ph25=2 2 2 2 3 3 3 3 0 0 0 0 1 1 1 1 
ph26=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3 
ph31=0 0 2 2 1 1 3 3 2 2 0 0 3 3 1 1


;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl11: f1 channel - power level for ROESY-spinlock
;p1 : f1 channel -  90 degree high power pulse
;p5 : f1 channel -  60 degree low power pulse
;p6 : f1 channel -  90 degree low power pulse
;p7 : f1 channel - 180 degree low power pulse
;p15: f1 channel - pulse for ROESY spinlock
;p17: f1 channel - trim pulse                        [2.5 msec]
;d0 : incremented delay (F1 in 3D)
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d10: incremented delay (F2 in 3D)
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;l1: loop for MLEV cycle: (((p6*64) + p5 ) * l1) + (p17*2) = mixing time
;inf1: 1/SW(H) = 2 * DW(H)
;inf2: 1/SW(H) = 2 * DW(H)
;in0: 1/(1 * SW(H)) = 2 * DW(H)
;nd0: 1
;in10: 1/(1 * SW(H)) = 2 * DW(H)
;nd10: 1
;ns: 4 * n
;ds: 32
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2

;for older datasets use AQORDER : 3 - 1 - 2


;Processing

;PHC0(F1): 180
;PHC1(F1): -180
;FCOR(F1): 1

;PHC0(F2): 90
;PHC1(F2): -180
;FCOR(F2): 1



;$Id:$
