;music_ile_3d
;avance-version (21/09/15)
;music: Ile(I)
;3D sequence with
;   inverse correlation for triple resonance using inept 
;   transfer steps 
;   CH3 selection
;
;      F1(H(CH3)) -> F2(C->->Ca,t1) -> F2(C=O) -> F3(N,t2) -> F1(H,t3)
; or
;      F1(H(CH3)) -> F2(C->->Ca) -> F2(C=O,t1) -> F3(N,t2) -> F1(H,t3)
;
;options:
;   no option       NH(Ile+1)
;                   Ca chemical shift evolution in t1 
;   LABEL_CO        CO chemical shift evolution in t1 
;possible breakthrough:
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t1
;using constant time in t2
;water suppression using watergate sequence
;(use parameterset )
;
;M. Schubert, H. Oschkinat & P. Schmieder,
;   J. Magn. Reson. 148, 61-72 (2001)
;(S. Grzesiek & A. Bax, J. Biomol. NMR 3, 185-204 (1993))
;(D.R. Muhandiram & L.E. Kay, J. Magn. Reson. B 103, 203-216 (1994))
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple2>


#include<Avance.incl>
#include<Grad.incl>
#include<Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d2=4.0m"
"d17=7.0m"
"d21=5.9m"
"d22=4.5m"
"d23=12.4m"
"d25=4.0m"
"d26=2.3m"
"d27=12.4m"
"d28=7.0m"

#   ifdef LABEL_CO
"d24=4.5m"
#   else
"d24=19.0m"
#   endif /*LABEL_CO*/


"d10=d23/2-p14/2"
"d29=d23/2-p14/2-p26-d21-4u"
"d30=d23/2-p14/2"

#   ifdef LABEL_CO
"d0=d22"
"d20=d27"
#   else
"d0=3u"
"d20=d24+p22+d0"
#   endif /*LABEL_CO*/

"in0=inf1/2"
"in10=inf2/4"

"in20=in0"
"in29=in10"
"in30=in10"

"td1=tdmax(td1,d20*2,in20)"
"td2=tdmax(td2,d30*2,in30)"


"DELTA1=d2-p19-d16"
"DELTA2=d2-p19-d16-4u"
"DELTA3=d24-d22+4u"
"DELTA4=d27-d22+4u"
"DELTA5=d26-p16-d16-p11-p1*2/3.1416-12u"
"DELTA6=d26-p16-d16-p11-de-12u"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst23)/1000000)"
"spoffs7=bf2*((cnst23-cnst21)/1000000)"
"spoffs8=0"
"spoffs9=bf2*((cnst46-cnst23)/1000000)"
"spoffs24=bf2*((cnst45-cnst23)/1000000)"
"spoffs29=bf2*((cnst37-cnst23)/1000000)"


#   ifdef LABEL_CO
"TAU9=0"

"o1_F1=bf2*cnst21/1000000"
#   else
"cnst62=-bf2*(cnst22-cnst23)"
"cnst63=-cnst62*(inf1/1000000)*360.0"

"TAU9=abs(cnst62+cnst63)/100000"

"o1_F1=bf2*cnst22/1000000"
#   endif /*LABEL_CO*/


aqseq 321


1 ze
  d11 pl16:f3
2 d11 do:f3
3 d11 fq=cnst23(bf ppm):f2
  d1
  50u UNBLKGRAD
  d12 pl1:f1 pl3:f3

  (p1 ph1):f1
  p19:gp1
  d16
  DELTA1
  (center (p2 ph1):f1 (p13:sp2 ph1):f2 )
  DELTA1
  p19:gp1
  d16
  (p1 ph1 p1 ph6):f1 (p34:sp24 ph1):f2 
  p19:gp1 
  d16
  DELTA2 pl19:f1
  4u cpds1:f1 ph1
  d17
  (p34:sp29 ph1):f2
  4u
  (p34:sp24 ph1):f2
  d17
  (p34:sp29 ph1):f2
  4u
  (p13:sp8 ph1):f2

  d28
  (p34:sp24 ph1):f2
  4u
  (p24:sp9 ph1):f2
  d28
  (p34:sp24 ph1):f2
  4u
  (p13:sp2 ph1):f2

  d25
  (p14:sp3 ph1):f2
  d25
  (p13:sp8 ph1):f2

#      ifdef LABEL_CO
  d22
  (p14:sp5 ph1):f2
  DELTA3
  (p14:sp3 ph1):f2
  d24
  (p14:sp5 ph1):f2
  4u
  (p13:sp2 ph7):f2

#      else
  d0
  (p22 ph1):f3
  d22
  (p14:sp5 ph1):f2
  DELTA3
  (p14:sp3 ph1):f2
  d20
  (p14:sp5 ph1):f2
  4u
  (p13:sp2 ph5):f2
#      endif /*LABEL_CO*/

  4u
  30u fq=cnst21(bf ppm):f2

#   ifdef LABEL_CO

  (p13:sp2 ph5):f2
  d0
  (p14:sp7 ph1):f2 
  DELTA4
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d20
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph1):f2

#   else

  (p13:sp2 ph7):f2
  d22
  (p14:sp7 ph1):f2
  DELTA4
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d27
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph1):f2

#   endif /*LABEL_CO*/

  (p21 ph8):f3
  d30
  (p14:sp7 ph1):f2
  d30
  (center (p14:sp3 ph1):f2 (p22 ph9):f3 )
  d10
  (p14:sp7 ph1):f2
  d29
  4u do:f1
  (p26 ph4):f1
  d21
  (p21 ph1):f3

  p16:gp2
  d16
  (p11:sp1 ph3):f1
  4u
  4u pl1:f1

  (p1 ph1) 
  4u
  p16:gp3
  d16
  DELTA5
  (p11:sp1 ph3):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph3):f1
  4u
  DELTA6
  p16:gp3
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 

#   ifdef LABEL_CO
     F1PH(calph(ph5, +90), caldel(d0, +in0) & caldel(d20, -in20))
#   else
     F1PH(calph(ph5, +90), caldel(d0, +in0) & caldel(d20, -in20) & calph(ph5, cnst63))
#   endif /*LABEL_CO*/

     F2PH(calph(ph8, -90), caldel(d10, +in10) & caldel(d29, +in29) & caldel(d30, -in30))

TAU9
exit


ph1=0
ph2=1
ph3=2
ph4=3
ph5=0 2
ph6=(12) 1 1 3 3 5 5 7 7 9 9 11 11
ph7=0 0 0 0 0 0 0 0 0 0 0 0
    0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2
    2 2 2 2 2 2 2 2 2 2 2 2
ph8=0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2
ph9=0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2
    1 1 1 1 1 1 1 1 1 1 1 1
    3 3 3 3 3 3 3 3 3 3 3 3
ph31=0 2 2 0 0 2 2 0 0 2 2 0
     2 0 0 2 2 0 0 2 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Cali off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp9: f2 channel - shaped pulse 180 degree  (off res. at cnst46)
;sp24: f2 channel - shaped pulse 180 degree  (off res. at cnst45)
;sp29: f2 channel - shaped pulse 180 degree  (off res. at cnst37)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p19: gradient pulse 2                                 [500 usec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse (sp9)
;p26: f1 channel -  90 degree pulse at pl19
;p34: f2 channel - 180 degree shaped pulse (sp24, sp29)
;                      (Q3.1000: 2.0ms at 600.13 MHz)
;d0 : incremented delay (F1 in 3D)
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(CH))                                       [4.0 msec]
;d10: incremented delay (F2 in 3D) =  d23/2-p14/2
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d17: 1/(4J(CC)                                        [7.0 msec]
;d20: decremented delay (F1 in 3D)
;d21: 1/(2J(NH)                                        [5.9 msec]
;d22: 1/(4J(CaCO)                                      [4.5 msec]
;d23: 1/(4J(NCO)                                       [12.4 msec]
;d24: n/(4J(CC)                                        [19 msec]
;     or 1/(4J(CC) (LABEL_CO)                          [4.5 msec]
;d25: 1/(4J(CC)                                        [4.0 msec]
;d26: 1/(4J(NH)                                        [2.3 msec]
;d27: 1/(4J(NCO)                                       [12.4 msec]
;d28: 1/(4J(CC)                                        [7.0 msec]
;d29: incremented delay (F2 in 3D) = d23/2-p14/2-p26-d21-4u
;d30: decremented delay (F2 in 3D) = d23/2-p14/2
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;cnst37: Cg(Ile) chem. shift (offset,in ppm)           [27.0 ppm]
;cnst45: Cd(Ile) chemical shift (offset, in ppm)       [11.0 ppm]
;cnst46: Cbg(Ile) chemical shift (offset, in ppm)      [33.0 ppm]
;cnst62: offset for Calpha region (Hz)
;cnst63: additional phase increment to center Calpha r
;o2p: Caliphatic chemical shift (cnst23) 
;     (or CO chemical shift (cnst21) for LABEL_CO)
;inf1: 1/SW(C) = 2 * DW(C)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(C)) =  DW(C)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in20: = in0
;in29: = in10
;in30: = in10
;ns: 12 * n
;ds: = 32
;td1: number of experiments in F1       td1 max = 2 * d20 / in20
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 3%
;gpz2: 70%
;gpz3: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



                                          ;preprocessor-flags-start
;LABEL_CO: for CO chem. shift evolution start experiment with
;             option -DLABEL_CO (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
