;music_pro_1_3d.2
;avance-version (21/09/15)
;music: Pro
;3D sequence with
;   inverse correlation for triple resonance using inept
;   transfer steps
;
;      F1(Ha) -> F2(Ca) -> F2(C=O) -> F3(N(Pro)) -> F2(C=O)
;             -> F2(Ca,t1) -> F3(N(Pro-1),t2) -> F1(H,t3)
; or
;      F1(Ha) -> F2(Ca) -> F2(C=O) -> F3(N(Pro)) -> F2(C=O,t1)
;             -> F2(Ca) -> F3(N(Pro-1),t2) -> F1(H,t3)
;
;options:
;   no option       NH(Pro-1)
;                   Ca chemical shift evolution in t1 
;   LABEL_CO        CO chemical shift evolution in t1 
;possible breakthrough:
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t1
;using constant time in t2
;water suppression using watergate sequence
;(use parameterset )
;
;M. Schubert, L. Ball, H. Oschkinat & P. Schmieder,
;   J. Biomol. NMR 17, 331-335 (2000)
;(S. Grzesiek & A. Bax, J. Biomol. NMR 3, 185-204 (1993))
;(D.R. Muhandiram & L.E. Kay, J. Magn. Reson. B 103, 203-216 (1994))
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple2>


#include<Avance.incl>
#include<Grad.incl>
#include<Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=2.1m"
"d4=1.7m"
"d21=5.5m"
"d22=4.5m"
"d23=12.4m"
"d26=2.3m"


"d0=d22"
"d10=d23/2-p14/2"
"d20=d23"
"d29=d23/2-p14/2-p26-d21-4u"
"d30=d23/2-p14/2"

"in0=inf1/2"
"in10=inf2/4"

"in20=in0"
"in29=in10"
"in30=in10"

"td1=tdmax(td1,d20*2,in20)"
"td2=tdmax(td2,d30*2,in30)"


"DELTA1=d22-d3"
"DELTA2=d23-d22+4u"
"DELTA3=d21+p26+4u"
"DELTA4=d23-d22+4u"
"DELTA5=d26-p16-d16-p11-p1*2/3.1416-12u"
"DELTA6=d26-p16-d16-p11-de-12u"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst22)/1000000)"
"spoffs7=bf2*((cnst22-cnst21)/1000000)"
"spoffs8=0"


aqseq 321


1 ze
  d11 pl16:f3
2 d11 do:f3
3 d11 fq=cnst22(bf ppm):f2
  30u fq=cnst48(bf ppm):f3
;  30u fq=cnst12(bf ppm):f3
  d1
  50u UNBLKGRAD
  d12 pl1:f1 pl3:f3

  (p1 ph1):f1
  d4
  (center (p2 ph1):f1 (p14:sp3 ph1):f2 )
  d4
  (p1 ph2):f1

  p16:gp3
  d16 pl19:f1

  (p13:sp2 ph5):f2
  d3
  DELTA1 cpds1:f1 ph1
  (p14:sp5 ph1):f2
  4u
  (p14:sp3 ph1):f2
  d22
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u
  30u fq=cnst21(bf ppm):f2

  (p13:sp2 ph6):f2
  d22
  (p14:sp7 ph1):f2
  DELTA2
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph1):f2

  (p21 ph7):f3
  DELTA3
  (p22 ph9):f3
  4u do:f1
  (p26 ph4):f1
  d21
  (p21 ph1):f3

  p16:gp4
  d16
  (p26 ph2):f1
  4u cpds1:f1 ph1

#      ifdef LABEL_CO
  (p13:sp2 ph9):f2
  4u
  (p14:sp7 ph1):f2
  d20
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  DELTA2
  (p14:sp7 ph1):f2
  d0
  (p13:sp8 ph1):f2
#      else
  (p13:sp2 ph8):f2
  4u
  (p14:sp7 ph1):f2
  d23
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  DELTA2
  (p14:sp7 ph1):f2
  d22
  (p13:sp8 ph1):f2
#      endif /*LABEL_CO*/

  4u
  30u fq=cnst22(bf ppm):f2
  30u fq=cnst47(bf ppm):f3
;  30u fq=cnst11(bf ppm):f3

#      ifdef LABEL_CO
  (p13:sp2 ph8):f2
  d22
  (p14:sp5 ph1):f2
  DELTA4
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2
#      else
  (p13:sp2 ph9):f2
  d0
  (p14:sp5 ph1):f2
  DELTA4
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d20
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2
#      endif /*LABEL_CO*/

  (p21 ph10):f3
  d30
  (p14:sp7 ph1):f2
  d30
  (center (p14:sp3 ph1):f2 (p22 ph11):f3 )
  d10
  (p14:sp7 ph1):f2
  d29
  4u do:f1
  (p26 ph4):f1
  d21
  (p21 ph1):f3

  p16:gp5
  d16
  (p11:sp1 ph3):f1
  4u
  4u pl1:f1

  (p1 ph1) 
  4u
  p16:gp6
  d16
  DELTA5
  (p11:sp1 ph3):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph3):f1
  4u
  DELTA6
  p16:gp6
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 

#   ifdef LABEL_CO
     F1PH(calph(ph9, +90), caldel(d0, +in0) & caldel(d20, -in20))
#   else
     F1PH(calph(ph9, -90), caldel(d0, +in0) & caldel(d20, -in20))
#   endif /*LABEL_CO*/

     F2PH(calph(ph10, -90), caldel(d10, +in10) & caldel(d29, +in29) & caldel(d30, -in30))
exit


ph1=0
ph2=1
ph3=2
ph4=3
ph5=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph6=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph7=0 0 0 0 2 2 2 2
ph8=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph9=0 0 2 2
ph10=0 2
ph11=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
     1 1 1 1 1 1 1 1 3 3 3 3 3 3 3 3
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;d0 : incremented delay (F1 in 3D) = d22
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(4J(CH))                                       [2.1 msec]
;d4 : 1/(4J(CH))                                       [1.7 msec]
;d10: incremented delay (F2 in 3D) =  d23/2-p14/2
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d23
;d21: 1/(2J(NH)                                        [5.5 msec]
;d22: 1/(4J(CaCO)                                      [4.5 msec]
;d23: 1/(4J(NC)                                        [12.4 msec]
;d26: 1/(4J(NH)                                        [2.3 msec]
;d29: incremented delay (F2 in 3D) = d23/2-p14/2-p26-d21-4u
;d30: decremented delay (F2 in 3D) = d23/2-p14/2
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst47: N(H) chemical shift (offset, in ppm)          [117.0 ppm]
;cnst48: N(Pro) chemical shift (offset, in ppm)        [134.0 ppm]
;o2p: Calpha chemical shift (cnst22)
;     (or CO chemical shift (cnst21) for LABEL_CO)
;inf1: 1/SW(C) = 2 * DW(C)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(C)) =  DW(C)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in20: = in0
;in29: = in10
;in30: = in10
;ns: 8 * n
;ds: = 32
;td1: number of experiments in F1       td1 max = 2 * d20 / in20
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 3 : gp 4 : gp 5 : gp 6
;                         50 :   40 :   60 :   30

;for z-only gradients:
;gpz3: 50%
;gpz4: 40%
;gpz5: 60%
;gpz6: 30%

;use gradient files:   
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100



                                          ;preprocessor-flags-start
;LABEL_CO: for CO chem. shift evolution start experiment with
;             option -DLABEL_CO (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
