;n_cbcan
;avance-version (21/09/15)
;2D sequence with
;   15N detected correlation for triple resonance using
;      inept transfer steps
;
;      F3(H) -> F2(Caliph.,t1 -> Ca) -> F1(N,t2)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;using constant time in t1
;(use parameterset )
;
;(M. Gal, K. A. Edmonds, A. G. Milbradt, K. Takeuchi & G. Wagner,
;   J Biomol NMR 51, 497-504 (2011))
;(S. Grzesiek & A. Bax, J. Magn. Reson. 99, 201-207 (1992))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include<Avance.incl>
#include<Grad.incl>
#include<Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=1.1m-larger(p14,p22)"
"d4=1.7m"
"d21=12.4m"
"d22=3.6m"
"d27=11.0m"


"d0=3u"
"d20=d22+d0-p14-4u"

"in0=inf1/2"

"in20=in0"

"td1=tdmax(td1,d20*2,in20)"


"DELTA1=d22-d3-larger(p14,p2)-p22"
"DELTA3=d21/2-p14/2-8u+p1*2/PI-de"
"DELTA4=d21/2-p14/2"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst23)/1000000)"
"spoffs8=0"


"cnst24=cnst21/2+cnst22/2"


"o1_F1=bf2*cnst23/1000000"


"acqt0=0"
baseopt_echo


1 ze
  d11 pl12:f2 pl16:f3
2 d11 do:f2 do:f3
3 d11
  d1 fq=cnst23(bf ppm):f2
  50u UNBLKGRAD
  d12 pl1:f1 pl3:f3

  (p21 ph1):f3
  d4
  (center (p22 ph1):f3 (p14:sp3 ph1):f2 )
  d4
  (p21 ph2):f3

  (p13:sp2 ph3):f2
  d0
  (center (p14:sp5 ph1):f2 (p2 ph1):f1 )
  d3
  (p22 ph10):f3
  DELTA1
  (p14:sp3 ph1):f2
  d20
  (p14:sp5 ph1):f2
  4u pl16:f3
  (p13:sp8 ph1):f2

  4u cpd3:f3 ph2
  d27
  (center (p14:sp3 ph1):f2 (p2 ph1):f1 )
  d27
  4u
  (p13:sp2 ph1):f2

  4u do:f3
  p16:gp1
  d16
  4u cpd3:f3 ph1

  (p1 ph5):f1
  DELTA4
  (p14:sp5 ph1):f2
  DELTA4
  (center (p14:sp3 ph1):f2 (p2 ph4):f1 )
  DELTA4
  (p14:sp5 ph1):f2
  4u fq=cnst24(bf ppm):f2
  DELTA3 pl12:f2
  4u BLKGRAD

  go=2 ph31 cpd2:f2
  d11 do:f2 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20)) 
exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=2
ph7=3
ph8=2
ph10=0 0 2 2
ph31=0 2 2 0 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : tau b : 1.1m-p14
;d4 : 1/(4J(CH)) = tau a                               [1.7 msec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (2D) = d22+d0-p14-4u
;d21: 1/(4J(CON))                                      [12.4 msec]
;d22: 1/(8J(CaCb)                                      [3.6 msec]
;d27: 1/(4J(CON))                                      [11.0 msec]
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;cnst24: center of Calpha and CO chemical shift (offset, in ppm)
;o2p: Caliphatic chemical shift (cnst23)
;inf1: 1/SW(Cali) = 2 * DW(Cali)
;in0: 1/(2 * SW(Cali)) =  DW(Cali)
;nd0: 2
;in20: = in0
;ns: 4 * n
;ds: >= 32
;td1: number of experiments in F1       td1 max = 2 * d20 / in20
;FnMODE: States-TPPI (or TPPI) in F1
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 40%

;use gradient files:   
;gpnam1: SMSQ10.100



;$Id: $
