;n_hcccon3d_d2o
;avance-version (21/09/15)
;3D sequence with
;   15N detected correlation for triple resonance using
;      dipsi2 and inept transfer steps 
;
;      F3(H) -> F2(Caliph.,t1 -> Ca) -> F2(C=O,t2) -> F1(N,t3)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive (t2)
;using constant time in t2
;using 2H decoupling because of solvent D2O
;(use parameterset )
;
;S. Chhabra, P. Fischer, K. Takeuchi, A. Dubey, J.J. Ziarek, A. Boeszoermenyi, 
;   D. Mathieu, W. Bermel, N. E. Davey, G. Wagner & H. Arthanari, PNAS , (2018)
;(M. Gal, K. A. Edmonds, A. G. Milbradt, K. Takeuchi & G. Wagner,
;   J Biomol NMR 51, 497-504 (2011))
;(G.T. Montelione, B.A. Lyons, S.D. Emerson & M. Tashiro, 
;   J. Am. Chem. Soc. 114, 10974-75 (1992))
;(S. Grzesiek, J. Anglister & A. Bax, J. Magn. Reson. 101 B, 114-9 (1993))
;(B.A. Lyons & G.T. Montelione, J. Magn. Reson. 101 B, 206-9 (1993))
;(T.M. Logan, E.T. Olejniczak, R.X. Xu & S.W. Fesik, 
;   J. Biomol. NMR 3, 225-31 (1993))
;(R.T. Clowes, W. Boucher, C.H. Hardman, P.J. Domaille & E.D. Laue, 
;   J. Biomol. NMR 3, 349-354 (1993))
;(T. Carlomagno, M. Maurer, M. Sattler, M.G. Schwendinger, S.J. Glaser
;   & C. Griesinger, J. Biomol. NMR 8, 161-170 (1996))
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include<Avance.incl>
#include<Grad.incl>
#include<Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=1.1m"
"d4=1.7m"
"d21=3.6m"
"d22=4.4m"
"d23=12.4m"


"d0=3u"
"d10=d22"
"d30=d23"

"in0=inf1/2"
"in10=inf2/2"

"in30=in10"

"td2=tdmax(td2,d30*2,in30)"


"l1=(d15/(p9*115.112))"
"d31=p9*115.112*l1"


"DELTA1=d3+p22+d0*2+larger(p2,p14)-p14-4u"
"DELTA2=d23+4u-d22"
"DELTA3=d23/2-p14/2"
"DELTA4=d23/2-p14/2-4u+p1*2/PI-de"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst23)/1000000)"
"spoffs7=bf2*((cnst22-cnst21)/1000000)"
"spoffs8=0"
"spoffs9=bf2*((cnst22-cnst23)/1000000)"


"cnst24=cnst21/2+cnst22/2"


"o1_F1=bf2*cnst23/1000000"
"o1_F2=bf2*cnst21/1000000"


"acqt0=0"
baseopt_echo


aqseq 321


1 ze
  d11 LOCKDEC_ON
  50u LOCKH_ON
  d11 H2_PULSE
  d11 pl12:f2 pl16:f3 pl17:f4

2 d11 do:f2 do:f3 do:f4
3 d11 H2_LOCK
  6m LOCKH_OFF
  d1 fq=cnst23(bf ppm):f2
  50u LOCKH_ON
  d12 H2_PULSE
  50u UNBLKGRAMP
  d12 pl1:f1 pl3:f3

  (p21 ph3):f3
  d4
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d4
  (p21 ph2):f3

  4u
  p16:gp1
  d16

  (p13:sp2 ph4):f2
  d0
  (center (p2 ph1):f1 (p14:sp5 ph1):f2 )
  d3
  (p22 ph1):f3
  d0
  (p14:sp3 ph1):f2
  DELTA1
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph2):f2

  4u
  4u pl15:f2

						;begin DIPSI2
7 (p9*3.556 ph23):f2
  (p9*4.556 ph25):f2
  (p9*3.222 ph23):f2
  (p9*3.167 ph25):f2
  (p9*0.333 ph23):f2
  (p9*2.722 ph25):f2
  (p9*4.167 ph23):f2
  (p9*2.944 ph25):f2
  (p9*4.111 ph23):f2
  
  (p9*3.556 ph25):f2
  (p9*4.556 ph23):f2
  (p9*3.222 ph25):f2
  (p9*3.167 ph23):f2
  (p9*0.333 ph25):f2
  (p9*2.722 ph23):f2
  (p9*4.167 ph25):f2
  (p9*2.944 ph23):f2
  (p9*4.111 ph25):f2

  (p9*3.556 ph25):f2
  (p9*4.556 ph23):f2
  (p9*3.222 ph25):f2
  (p9*3.167 ph23):f2
  (p9*0.333 ph25):f2
  (p9*2.722 ph23):f2
  (p9*4.167 ph25):f2
  (p9*2.944 ph23):f2
  (p9*4.111 ph25):f2

  (p9*3.556 ph23):f2
  (p9*4.556 ph25):f2
  (p9*3.222 ph23):f2
  (p9*3.167 ph25):f2
  (p9*0.333 ph23):f2
  (p9*2.722 ph25):f2
  (p9*4.167 ph23):f2
  (p9*2.944 ph25):f2
  (p9*4.111 ph23):f2
  lo to 7 times l1
						;end DIPSI2

  d12 pl16:f3
  d12 cpd3:f3 ph2

  (p13:sp2 ph1):f2
  4u
  (p14:sp5 ph1):f2
  d21 
  (p24:sp9 ph1):f2
  4u
  (p14:sp5 ph1):f2
  d21
  (p13:sp8 ph2):f2

  4u
  d12 fq=cnst21(bf ppm):f2

  (p13:sp2 ph5):f2
  d10
  (p14:sp7 ph1):f2
  DELTA2
  (center (p2 ph8):f1 (p14:sp3 ph1):f2 )
  d30
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u
  4u do:f3
  p16:gp2
  d16
  4u cpd3:f3 cpd4:f4

  (p1 ph6):f1
  DELTA3 BLKGRAMP
  (p14:sp7 ph1):f2
  DELTA3
  (center (p2 ph1):f1 (p14:sp3 ph1):f2 )
  DELTA3
  (p14:sp7 ph1):f2
  DELTA4 fq=cnst24(bf ppm):f2
  4u pl12:f2

  go=2 ph31 cpd2:f2
  d11 do:f2 do:f3 do:f4 mc #0 to 2 
     F1PH(calph(ph4, +90), caldel(d0, +in0))
     F2PH(calph(ph5, +90), caldel(d10, +in10) & caldel(d30, -in30))
  d31

  d11 H2_LOCK
  d11 LOCKH_OFF
  d11 LOCKDEC_OFF

exit


ph1=0
ph2=1
ph3=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph4=0 0 2 2
ph5=0 0 0 0 2 2 2 2
ph6=0 2
ph7=2
ph8=0
ph9=0
ph10=2
ph23=0
ph25=2
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl15: f2 channel - power level for TOCSY-spinlock
;pl16: f3 channel - power level for CPD/BB decoupling
;pl17: f4 channel - power level for CPD/BB decoupling
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp9: f2 channel - shaped pulse 180 degree  (Ca on resonance)
;     sp9 might require higher selectivity than sp3
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p9 : f2 channel -  90 degree low power pulse
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse (sp9)
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(CH)                                        [1.1 msec]
;d4:  1/(4J(CH)                                        [1.7 msec]
;d10: incremented delay (F2 in 3D) = d22
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d15: TOCSY mixing time                                [12 msec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J'(CaCO))                                    [3.6 msec]
;d22: 1/(2J(CaCO)                                      [4.4 msec]
;d23: constant time delay T(N) = 1/(4J'(NCO)           [12.4 msec]
;d30: decremented delay (F2 in 3D) = d23
;d31: TOCSY mixing time as executed
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;cnst24: center of Calpha and CO chemical shift (offset, in ppm)
;o2p: Caliphatic chemical shift (cnst23)
;l1: loop for DIPSI2 cycle: ((p6*115.112) * l1) = mixing time
;inf1: 1/SW(Cali) = 2 * DW(Cali)
;inf2: 1/SW(CO) = 2 * DW(CO)
;in0: 1/(2 * SW(Cali)) =  DW(Cali)
;nd0: 2
;in10: 1/(2 * SW(CO)) = DW(CO)
;nd10: 2
;in30: = in10
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd2: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;cpd4: decoupling according to sequence defined by cpdprg4
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence
;pcpd4: f4 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 40%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id: $
