;n_hninept_f2ig
;avance-version (15/03/20)
;2D 15N shift correlation
;with refocussing of chemical shifts
;phase sensitive
;using semi-constant time in t1
;(use parameterset )
;
;(A. Bax & G.A. Morris, J. Magn. Reson. 42, 501 (1981))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d25=1s/(cnst4*cnst11)"
"d26=1s/(cnst4*4)"

"d20=3u"
"d0=d26"
"d28=d26+p2+d20"

"in0=inf1/2"

"FACTOR1=d28*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in0 ) { in20= 0; } else { in20=in0-INCR1; }"
"if ( INCR1 > in0 ) { in28=in0; } else { in28 = INCR1; }"


1 ze
2 d11
3 d1 do:f2 do:f3
  d12 pl1:f1 pl12:f2 pl3:f3
  50u UNBLKGRAD

  (p21 ph1):f3
  d0
  (p2 ph4):f1
  d20
  (p22 ph2):f3
  d28
  (p21 ph3):f3

  p16:gp1
  d16 

  (p1 ph5):f1
  d25 BLKGRAD
  (center (p22 ph2):f3 (p2 ph6):f1 )
  d25 pl16:f3

  go=2 ph31 cpd2:f2 cpd3:f3
  d11 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, +in20) & caldel(d28, -in28))
  20u do:f2 do:f3
exit


ph1=0
ph2=0 0 2 2
ph3=1 3
ph4=0 0 2 2
ph5=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph6=0 0 2 2 1 1 3 3
ph31=0 2 0 2 1 3 1 3 2 0 2 0 3 1 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse                       [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D) = d26
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: incremented delay (2D)                         [3 usec]
;d25: 1/(6J(NH))  NH, NH2 positive
;     1/(4J(NH))  NH only
;     1/(3J(NH))  NH positive, NH2 negative
;d26: 1/(4J(NH))
;d28: decremented delay (2D) = d26+p2+d20
;cnst4: = J(NH)
;cnst11: = 6  NH, NH2 positive
;          4  NH only
;          3  NH positive, NH2 negative
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;in20: = (1 - k1) * in0
;in28: = k1 * in0
;ns: 2 * n
;ds: >=32
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%

;use gradient files:
;gpnam1: SMSQ10.100


;$Id:$
