;n_noesy_hninept
;avance-version (21/09/15)
;NOESY-HETCOR
;2D sequence with
;   homonuclear correlation via dipolar coupling
;   dipolar coupling may be due to noe or chemical exchange.
;   H1/N15 correlation via refocussed inept transfer
;phase sensitive (t1)
;using semi-constant-time in t1
;(use parameterset )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d26=1s/(cnst4*4)"


"d0=3u"

"in0=inf1/2"


"DELTA1=d0*2+larger(p8,p2)"
"DELTA2=d26-p16-d16"
"DELTA3=d26-p16-d16-4u+p1*2/PI-de"

"TAU=d8-p16-d16-4u"


"spoffs13=0"


"acqt0=0"
baseopt_echo


1 ze
  d11 pl16:f3
2 d11 do:f2 do:f3
3 d12 pl1:f1 pl3:f3
  d1
  50u UNBLKGRAD

  (p21 ph3):f3
  DELTA1
  (p22 ph4):f3
  d0
  (center (p8:sp13 ph1):f2 (p2 ph1):f1 )
  d0
  (p21 ph5):f3

  4u
  p16:gp1
  d16 pl12:f2
  TAU

  (p21 ph6):f3
  p16:gp2
  d16
  DELTA2
  (center (p2 ph1) (p22 ph2):f3 )
  DELTA2
  p16:gp2
  d16
  (p21 ph2):f3

  p16:gp3
  d16

  (p1 ph7):f1
  p16:gp4
  d16
  DELTA2 BLKGRAD
  (center (p22 ph2):f3 (p2 ph6):f1 )
  DELTA3
  p16:gp4
  d16 pl16:f3
  4u BLKGRAD

  go=2 ph31 cpd2:f2 cpd3:f3
  d11 do:f2 do:f3 mc #0 to 2 
     F1PH(calph(ph3, +90) & calph(ph4, +90), caldel(d0, +in0)) 
exit
   

ph1=0 
ph2=1
ph3=0 0 2 2
ph4=1 1 3 3
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=0 0 0 0 2 2 2 2
ph7=0 2
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;spnam13: Crp60,0.5,20.1
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8: f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;     = 500usec for Crp60,0.5,20.1
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d26: 1/(4J(NH))
;cnst4: = J(NH)
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;ns: 16 * n
;ds: >= 32
;td1: number of experiments in F1
;FnMODE: States-TPPI (or TPPI) in F1
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f3 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 33%
;gpz2: 40%
;gpz3: 20%
;gpz4: 50%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100



;$Id: $
