;na_hccnhdigpwg3d
;avance-version (12/01/11)
;HCCNH-TOCSY: H6/8(CCC)NH                   
;3D sequence with
;   inverse correlation for triple resonance 
;      via multiple inept transfer steps
;      and DIPSI3 CC spinlock and CN hetero TOCSY
;
;   in U:
;      F1(H6,t1) -> F2(C) -> F3(N3,t2) -> F1(NH,t3)
;
;   in G:
;      F1(H8,t1) -> F2(C) -> F3(N1,t2) -> F1(NH,t3)
;
;phase sensitive (t1)
;phase sensitive (t2)
;water suppression using watergate sequence
;(use parameterset NA_HCCNHDIGPWG3D)
;
;V. Sklenar, T. Dieckmann, S. E.Butcher & J. Feigon,
;   J. Biomol. NMR 7, 83 - 87 (1996)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_na>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"
"d13=4u"
"d26=1s/(cnst4*4)"


"d0=3u" 
"d10=6u" 

"in0=inf1/2"
"in10=inf2/2"


"DELTA=d4-p4-d0*2"
"DELTA1=d26-p16-d16-p11-d12*2-d13"
"DELTA2=d26-d10*2-4u-d12-d13-larger(p2,p4)"


aqseq 312


1 ze
  d11 pl16:f3
2 d11 do:f3
3 d12 pl32:f1 pl2:f2
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  
  (p1 ph3):f1
  DELTA UNBLKGRAD
  d0
  (p4 ph6):f2
  d0
  (p2 ph1)
  d4
  (p1 ph2) 

  d13
  p16:gp1
  d16

  (p3 ph4):f2
  d4
  (center (p2 ph1) (p4 ph1):f2 )
  d4 pl26:f2 pl23:f3

  (p20 ph7):f2		   
					;begin DIPSI3:f2
4 (p25*2.722 ph7):f2
  (p25*4.389 ph9):f2
  (p25*2.778 ph7):f2
  (p25*3.056 ph9):f2
  (p25*0.333 ph7):f2
  (p25*2.556 ph9):f2
  (p25*4.000 ph7):f2
  (p25*2.722 ph9):f2
  (p25*4.111 ph7):f2
  (p25*3.778 ph9):f2
  (p25*3.889 ph7):f2
  (p25*2.889 ph9):f2
  (p25*3.000 ph7):f2
  (p25*0.333 ph9):f2
  (p25*2.500 ph7):f2
  (p25*4.050 ph9):f2
  (p25*2.830 ph7):f2
  (p25*4.389 ph9):f2
  (p25*2.722 ph9):f2
  (p25*4.389 ph7):f2
  (p25*2.778 ph9):f2
  (p25*3.056 ph7):f2
  (p25*0.333 ph9):f2
  (p25*2.556 ph7):f2
  (p25*4.000 ph9):f2
  (p25*2.722 ph7):f2
  (p25*4.111 ph9):f2
  (p25*3.778 ph7):f2
  (p25*3.889 ph9):f2
  (p25*2.889 ph7):f2
  (p25*3.000 ph9):f2
  (p25*0.333 ph7):f2
  (p25*2.500 ph9):f2
  (p25*4.050 ph7):f2
  (p25*2.830 ph9):f2
  (p25*4.389 ph7):f2
  (p25*2.722 ph9):f2
  (p25*4.389 ph7):f2
  (p25*2.778 ph9):f2
  (p25*3.056 ph7):f2
  (p25*0.333 ph9):f2
  (p25*2.556 ph7):f2
  (p25*4.000 ph9):f2
  (p25*2.722 ph7):f2
  (p25*4.111 ph9):f2
  (p25*3.778 ph7):f2
  (p25*3.889 ph9):f2
  (p25*2.889 ph7):f2
  (p25*3.000 ph9):f2
  (p25*0.333 ph7):f2
  (p25*2.500 ph9):f2
  (p25*4.050 ph7):f2
  (p25*2.830 ph9):f2
  (p25*4.389 ph7):f2
  (p25*2.722 ph7):f2
  (p25*4.389 ph9):f2
  (p25*2.778 ph7):f2
  (p25*3.056 ph9):f2
  (p25*0.333 ph7):f2
  (p25*2.556 ph9):f2
  (p25*4.000 ph7):f2
  (p25*2.722 ph9):f2
  (p25*4.111 ph7):f2
  (p25*3.778 ph9):f2
  (p25*3.889 ph7):f2
  (p25*2.889 ph9):f2
  (p25*3.000 ph7):f2
  (p25*0.333 ph9):f2
  (p25*2.500 ph7):f2
  (p25*4.050 ph9):f2
  (p25*2.830 ph7):f2
  (p25*4.389 ph9):f2
  lo to 4 times l1

					;begin DIPSI3:f3
5 (p25*2.722 ph7):f2 (p25*2.722 ph7):f3
  (p25*4.389 ph9):f2 (p25*4.389 ph9):f3
  (p25*2.778 ph7):f2 (p25*2.778 ph7):f3
  (p25*3.056 ph9):f2 (p25*3.056 ph9):f3
  (p25*0.333 ph7):f2 (p25*0.333 ph7):f3
  (p25*2.556 ph9):f2 (p25*2.556 ph9):f3
  (p25*4.000 ph7):f2 (p25*4.000 ph7):f3
  (p25*2.722 ph9):f2 (p25*2.722 ph9):f3
  (p25*4.111 ph7):f2 (p25*4.111 ph7):f3
  (p25*3.778 ph9):f2 (p25*3.778 ph9):f3
  (p25*3.889 ph7):f2 (p25*3.889 ph7):f3
  (p25*2.889 ph9):f2 (p25*2.889 ph9):f3
  (p25*3.000 ph7):f2 (p25*3.000 ph7):f3
  (p25*0.333 ph9):f2 (p25*0.333 ph9):f3
  (p25*2.500 ph7):f2 (p25*2.500 ph7):f3
  (p25*4.050 ph9):f2 (p25*4.050 ph9):f3
  (p25*2.830 ph7):f2 (p25*2.830 ph7):f3
  (p25*4.389 ph9):f2 (p25*4.389 ph9):f3
  (p25*2.722 ph9):f2 (p25*2.722 ph9):f3
  (p25*4.389 ph7):f2 (p25*4.389 ph7):f3
  (p25*2.778 ph9):f2 (p25*2.778 ph9):f3
  (p25*3.056 ph7):f2 (p25*3.056 ph7):f3
  (p25*0.333 ph9):f2 (p25*0.333 ph9):f3
  (p25*2.556 ph7):f2 (p25*2.556 ph7):f3
  (p25*4.000 ph9):f2 (p25*4.000 ph9):f3
  (p25*2.722 ph7):f2 (p25*2.722 ph7):f3
  (p25*4.111 ph9):f2 (p25*4.111 ph9):f3
  (p25*3.778 ph7):f2 (p25*3.778 ph7):f3
  (p25*3.889 ph9):f2 (p25*3.889 ph9):f3
  (p25*2.889 ph7):f2 (p25*2.889 ph7):f3
  (p25*3.000 ph9):f2 (p25*3.000 ph9):f3
  (p25*0.333 ph7):f2 (p25*0.333 ph7):f3
  (p25*2.500 ph9):f2 (p25*2.500 ph9):f3
  (p25*4.050 ph7):f2 (p25*4.050 ph7):f3
  (p25*2.830 ph9):f2 (p25*2.830 ph9):f3
  (p25*4.389 ph7):f2 (p25*4.389 ph7):f3
  (p25*2.722 ph9):f2 (p25*2.722 ph9):f3
  (p25*4.389 ph7):f2 (p25*4.389 ph7):f3
  (p25*2.778 ph9):f2 (p25*2.778 ph9):f3
  (p25*3.056 ph7):f2 (p25*3.056 ph7):f3
  (p25*0.333 ph9):f2 (p25*0.333 ph9):f3
  (p25*2.556 ph7):f2 (p25*2.556 ph7):f3
  (p25*4.000 ph9):f2 (p25*4.000 ph9):f3
  (p25*2.722 ph7):f2 (p25*2.722 ph7):f3
  (p25*4.111 ph9):f2 (p25*4.111 ph9):f3
  (p25*3.778 ph7):f2 (p25*3.778 ph7):f3
  (p25*3.889 ph9):f2 (p25*3.889 ph9):f3
  (p25*2.889 ph7):f2 (p25*2.889 ph7):f3
  (p25*3.000 ph9):f2 (p25*3.000 ph9):f3
  (p25*0.333 ph7):f2 (p25*0.333 ph7):f3
  (p25*2.500 ph9):f2 (p25*2.500 ph9):f3
  (p25*4.050 ph7):f2 (p25*4.050 ph7):f3
  (p25*2.830 ph9):f2 (p25*2.830 ph9):f3
  (p25*4.389 ph7):f2 (p25*4.389 ph7):f3
  (p25*2.722 ph7):f2 (p25*2.722 ph7):f3
  (p25*4.389 ph9):f2 (p25*4.389 ph9):f3
  (p25*2.778 ph7):f2 (p25*2.778 ph7):f3
  (p25*3.056 ph9):f2 (p25*3.056 ph9):f3
  (p25*0.333 ph7):f2 (p25*0.333 ph7):f3
  (p25*2.556 ph9):f2 (p25*2.556 ph9):f3
  (p25*4.000 ph7):f2 (p25*4.000 ph7):f3
  (p25*2.722 ph9):f2 (p25*2.722 ph9):f3
  (p25*4.111 ph7):f2 (p25*4.111 ph7):f3
  (p25*3.778 ph9):f2 (p25*3.778 ph9):f3
  (p25*3.889 ph7):f2 (p25*3.889 ph7):f3
  (p25*2.889 ph9):f2 (p25*2.889 ph9):f3
  (p25*3.000 ph7):f2 (p25*3.000 ph7):f3
  (p25*0.333 ph9):f2 (p25*0.333 ph9):f3
  (p25*2.500 ph7):f2 (p25*2.500 ph7):f3
  (p25*4.050 ph9):f2 (p25*4.050 ph9):f3
  (p25*2.830 ph7):f2 (p25*2.830 ph7):f3
  (p25*4.389 ph9):f2 (p25*4.389 ph9):f3
  lo to 5 times l4
					;end DIPSI3:f2, DIPSI3:f3

  d13 
  d12 pl2:f2 pl3:f3
  DELTA2
  d10 gron0
  2u groff
  (center (p2 ph1):f1 (p4 ph1):f2 )
  d10 gron0*-1
  2u groff
  (p22 ph1):f3
  d26
  (p21 ph5):f3

  d13
  p16:gp2	
  d16 pl0:f1
  (p29:sp11 ph10:r):f1			
  d13					
  d12 pl1:f1

  (p1 ph1):f1
  DELTA1
  p16:gp3			
  d16
  d12 pl0:f1		
  (p11:sp1 ph11:r):f1			
  d13					
  d12 pl1:f1
  (center (p2 ph1):f1 (p22 ph8):f3 )
  d13
  d12 pl0:f1
  (p11:sp1 ph11:r):f1			
  d12
  p16:gp3				
  d16
  DELTA1 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2
     F1PH(calph(ph3, +90) & calph(ph29, +90), caldel(d0, +in0))
     F2PH(calph(ph5, +90) & calph(ph8, +90), caldel(d10, +in10))
exit


ph1 = 0  
ph2 = 1
ph3 = 0
ph4 = 1 3
ph5 = 1 1 3 3 
ph6 = 0 0 0 0 2 2 2 2
ph7 = 1 
ph8 = 0
ph9 = 3
ph10= 2 
ph11= 2
ph29=0
ph31= 0 2 2 0


;pl0 : 120db
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl23: f3 channel - power level for TOCSY-spinlock
;pl26: f2 channel - power level for TOCSY-spinlock (higher sel. II)
;         to match p25/pl23
;pl32: f1 channel - power level for low power presaturation
;sp1 : f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp11: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse              [1 msec]
;p16: homospoil/gradient pulse 1                        [1 msec]
;p20: f2 channel - trim pulse                           [2 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p25: f3 channel -  90 degree pulse at pl23
;p29: f1 channel -  90 degree shaped pulse		[1 msec]
;d0 : incremented delay (F1 in 3D)                      [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(HC))                                        [1.3 msec]
;d10: incremented delay (F2 in 3D)                      [6 usec]
;d11: delay for disk I/O                                [30 msec]
;d12: delay for power switching                         [20 usec]
;d13: short delay                                       [4 usec]
;d16: delay for homospoil/gradient recovery
;d26: 1/(4J(HN))					[2.5 msec]
;cnst2: = J(HC)
;cnst4: = J(HN)
;o2p: 149 ppm
;o3p: 160 ppm
;l1: loop for DIPSI cycle: mixing time C-13 only
;       mixing time = ((p25*217.3) * l1) + (p20)	[19.4 msec]
;l4: loop for DIPSI cycle: mixing time C-13/N-15
;       mixing time = ((p25*217.3) * l4)		[58 msec]
;inf1: 1/SW(H) = 2 * DW(H)
;inf2: 1/SW(C) = 2 * DW(C)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;in10: 1/(2 * SW(C)) = DW(C)
;nd10: 2
;ns: 16 * n
;ds: 32
;td1: number of experiments in F1
;td2: number of experiments in F2       
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 0 : gp 1 : gp 2 : gp 3
;                          3 :   35 :   25 :   60

;for z-only gradients:
;gpz0: 3%
;gpz1: 50%
;gpz2: 60%
;gpz3: 70%

;use gradient files:
;gpname1: SMSQ10.100
;gpname2: SMSQ10.100
;gpname3: SMSQ10.100


;set pl32 to 0W when presaturation is not required
;   use pl1 + 75 to 80dB to reduce radiation damping



;$Id:$
