;na_pcchdi2
;avance-version (12/01/11)
;CP-COSY, CC-TOCSY, hetero-CH-TOCSY
;2D P-31/H-1 correlation via inept transfer steps
;   and hetero TOCSY using a DIPSI3 spinlock
;
;      F3(P,t1) -> F2(C,TOCSY) -> F1(H,t2)
;
;phase sensitive
;(use parameterset NA_PCCHDI2)
;
;S.S. Wijmenga, H.A. Heus, H.A.E. Leeuw, H. Hoppe, 
;   M. van der Graaf & C.W. Hilbers, J. Biomol. NMR 5, 82-86 (1995)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_na>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"p0=p1*4/3"
"p9=p6"

"d22=12.5m"


"d0=3u"

"in0=inf1/2"


"l1=(d15/(p9*217.30))"


"DELTA=d22+d0*2+larger(p2,p4)-p4"
"DELTA1=d22+p22+p3*2/3.1416"


"l4=d1/(p0+5m)"


1 ze
  d11 pl12:f2

2 d11 do:f2
3 d12 pl1:f1 pl2:f2

4 (p0 ph1)
  5m
  lo to 4 times l4
  4u
  50u UNBLKGRAD

  p16:gp1
  d16

  (p21 ph3):f3
  d0 
  (center (p2 ph5) (p4 ph1):f2 )
  d0

  d22
  (p22 ph1):f3
  (p4 ph1):f2
  DELTA
  (p21 ph2):f3

  p16:gp2
  d16

  (p3 ph4):f2
  d22
  (p22 ph1):f3
  (p4 ph1):f2
  DELTA1 pl10:f1 pl15:f2
  (p20 ph21):f2

						;begin DIPSI3:f2
5 (p9*2.722 ph21):f2
  (p9*4.389 ph22):f2
  (p9*2.778 ph21):f2
  (p9*3.056 ph22):f2
  (p9*0.333 ph21):f2
  (p9*2.556 ph22):f2
  (p9*4.000 ph21):f2
  (p9*2.722 ph22):f2
  (p9*4.111 ph21):f2
  (p9*3.778 ph22):f2
  (p9*3.889 ph21):f2
  (p9*2.889 ph22):f2
  (p9*3.000 ph21):f2
  (p9*0.333 ph22):f2
  (p9*2.500 ph21):f2
  (p9*4.050 ph22):f2
  (p9*2.830 ph21):f2
  (p9*4.389 ph22):f2

  (p9*2.722 ph22):f2
  (p9*4.389 ph21):f2
  (p9*2.778 ph22):f2
  (p9*3.056 ph21):f2
  (p9*0.333 ph22):f2
  (p9*2.556 ph21):f2
  (p9*4.000 ph22):f2
  (p9*2.722 ph21):f2
  (p9*4.111 ph22):f2
  (p9*3.778 ph21):f2
  (p9*3.889 ph22):f2
  (p9*2.889 ph21):f2
  (p9*3.000 ph22):f2
  (p9*0.333 ph21):f2
  (p9*2.500 ph22):f2
  (p9*4.050 ph21):f2
  (p9*2.830 ph22):f2
  (p9*4.389 ph21):f2

  (p9*2.722 ph22):f2
  (p9*4.389 ph21):f2
  (p9*2.778 ph22):f2
  (p9*3.056 ph21):f2
  (p9*0.333 ph22):f2
  (p9*2.556 ph21):f2
  (p9*4.000 ph22):f2
  (p9*2.722 ph21):f2
  (p9*4.111 ph22):f2
  (p9*3.778 ph21):f2
  (p9*3.889 ph22):f2
  (p9*2.889 ph21):f2
  (p9*3.000 ph22):f2
  (p9*0.333 ph21):f2
  (p9*2.500 ph22):f2
  (p9*4.050 ph21):f2
  (p9*2.830 ph22):f2
  (p9*4.389 ph21):f2

  (p9*2.722 ph21):f2
  (p9*4.389 ph22):f2
  (p9*2.778 ph21):f2
  (p9*3.056 ph22):f2
  (p9*0.333 ph21):f2
  (p9*2.556 ph22):f2
  (p9*4.000 ph21):f2
  (p9*2.722 ph22):f2
  (p9*4.111 ph21):f2
  (p9*3.778 ph22):f2
  (p9*3.889 ph21):f2
  (p9*2.889 ph22):f2
  (p9*3.000 ph21):f2
  (p9*0.333 ph22):f2
  (p9*2.500 ph21):f2
  (p9*4.050 ph22):f2
  (p9*2.830 ph21):f2
  (p9*4.389 ph22):f2
  lo to 5 times l1
						;begin DIPSI3:f1
6 (p6*2.722 ph11):f1 (p9*2.722 ph21):f2
  (p6*4.389 ph12):f1 (p9*4.389 ph22):f2
  (p6*2.778 ph11):f1 (p9*2.778 ph21):f2
  (p6*3.056 ph12):f1 (p9*3.056 ph22):f2
  (p6*0.333 ph11):f1 (p9*0.333 ph21):f2
  (p6*2.556 ph12):f1 (p9*2.556 ph22):f2
  (p6*4.000 ph11):f1 (p9*4.000 ph21):f2
  (p6*2.722 ph12):f1 (p9*2.722 ph22):f2
  (p6*4.111 ph11):f1 (p9*4.111 ph21):f2
  (p6*3.778 ph12):f1 (p9*3.778 ph22):f2
  (p6*3.889 ph11):f1 (p9*3.889 ph21):f2
  (p6*2.889 ph12):f1 (p9*2.889 ph22):f2
  (p6*3.000 ph11):f1 (p9*3.000 ph21):f2
  (p6*0.333 ph12):f1 (p9*0.333 ph22):f2
  (p6*2.500 ph11):f1 (p9*2.500 ph21):f2
  (p6*4.050 ph12):f1 (p9*4.050 ph22):f2
  (p6*2.830 ph11):f1 (p9*2.830 ph21):f2
  (p6*4.389 ph12):f1 (p9*4.389 ph22):f2

  (p6*2.722 ph12):f1 (p9*2.722 ph22):f2
  (p6*4.389 ph11):f1 (p9*4.389 ph21):f2
  (p6*2.778 ph12):f1 (p9*2.778 ph22):f2
  (p6*3.056 ph11):f1 (p9*3.056 ph21):f2
  (p6*0.333 ph12):f1 (p9*0.333 ph22):f2
  (p6*2.556 ph11):f1 (p9*2.556 ph21):f2
  (p6*4.000 ph12):f1 (p9*4.000 ph22):f2
  (p6*2.722 ph11):f1 (p9*2.722 ph21):f2
  (p6*4.111 ph12):f1 (p9*4.111 ph22):f2
  (p6*3.778 ph11):f1 (p9*3.778 ph21):f2
  (p6*3.889 ph12):f1 (p9*3.889 ph22):f2
  (p6*2.889 ph11):f1 (p9*2.889 ph21):f2
  (p6*3.000 ph12):f1 (p9*3.000 ph22):f2
  (p6*0.333 ph11):f1 (p9*0.333 ph21):f2
  (p6*2.500 ph12):f1 (p9*2.500 ph22):f2
  (p6*4.050 ph11):f1 (p9*4.050 ph21):f2
  (p6*2.830 ph12):f1 (p9*2.830 ph22):f2
  (p6*4.389 ph11):f1 (p9*4.389 ph21):f2

  (p6*2.722 ph12):f1 (p9*2.722 ph22):f2
  (p6*4.389 ph11):f1 (p9*4.389 ph21):f2
  (p6*2.778 ph12):f1 (p9*2.778 ph22):f2
  (p6*3.056 ph11):f1 (p9*3.056 ph21):f2
  (p6*0.333 ph12):f1 (p9*0.333 ph22):f2
  (p6*2.556 ph11):f1 (p9*2.556 ph21):f2
  (p6*4.000 ph12):f1 (p9*4.000 ph22):f2
  (p6*2.722 ph11):f1 (p9*2.722 ph21):f2
  (p6*4.111 ph12):f1 (p9*4.111 ph22):f2
  (p6*3.778 ph11):f1 (p9*3.778 ph21):f2
  (p6*3.889 ph12):f1 (p9*3.889 ph22):f2
  (p6*2.889 ph11):f1 (p9*2.889 ph21):f2
  (p6*3.000 ph12):f1 (p9*3.000 ph22):f2
  (p6*0.333 ph11):f1 (p9*0.333 ph21):f2
  (p6*2.500 ph12):f1 (p9*2.500 ph22):f2
  (p6*4.050 ph11):f1 (p9*4.050 ph21):f2
  (p6*2.830 ph12):f1 (p9*2.830 ph22):f2
  (p6*4.389 ph11):f1 (p9*4.389 ph21):f2

  (p6*2.722 ph11):f1 (p9*2.722 ph21):f2
  (p6*4.389 ph12):f1 (p9*4.389 ph22):f2
  (p6*2.778 ph11):f1 (p9*2.778 ph21):f2
  (p6*3.056 ph12):f1 (p9*3.056 ph22):f2
  (p6*0.333 ph11):f1 (p9*0.333 ph21):f2
  (p6*2.556 ph12):f1 (p9*2.556 ph22):f2
  (p6*4.000 ph11):f1 (p9*4.000 ph21):f2
  (p6*2.722 ph12):f1 (p9*2.722 ph22):f2
  (p6*4.111 ph11):f1 (p9*4.111 ph21):f2
  (p6*3.778 ph12):f1 (p9*3.778 ph22):f2
  (p6*3.889 ph11):f1 (p9*3.889 ph21):f2
  (p6*2.889 ph12):f1 (p9*2.889 ph22):f2
  (p6*3.000 ph11):f1 (p9*3.000 ph21):f2
  (p6*0.333 ph12):f1 (p9*0.333 ph22):f2
  (p6*2.500 ph11):f1 (p9*2.500 ph21):f2
  (p6*4.050 ph12):f1 (p9*4.050 ph22):f2
  (p6*2.830 ph11):f1 (p9*2.830 ph21):f2
  (p6*4.389 ph12):f1 (p9*4.389 ph22):f2
						;end DIPSI3:f1, DIPSI3:f2


  4u pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=1 1 1 1 3 3 3 3
ph5=0 0 2 2

ph11=1
ph12=3
ph21=1
ph22=3

ph31=0 2 0 2 2 0 2 0
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl12: f2 channel - power level for CPD/BB decoupling
;pl15: f2 channel - power level for TOCSY-spinlock
;p0 : f1 channel - 120 degree high power pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p6 : f1 channel -  90 degree low power pulse
;p9 : f2 channel -  90 degree low power pulse = p6
;p16: homospoil/gradient pulse
;p20: f2 channel - trim pulse                           [2 ms]
;p21: f2 channel -  90 degree high power pulse
;p22: f2 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                            [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                                [30 msec]
;d12: delay for power switching                         [20 usec]
;d15: TOCSY mixing time (CC)                            [13 msec]
;d16: delay for homospoil/gradient recovery
;d22: 1/(4J(CP))                                        [12.5 msec]
;o2p: 77 ppm
;o3p: 0 ppm
;l1: loop for DIPSI cycle:
;       mixing time = ((p9*217.3) * l1) + (p20)         [15 msec]
;l4: loop for saturation sequence: = d1 / (p0 + 5m)
;inf1: 1/SW(P) = 2 * DW(P)
;in0: 1/(2 * SW(P)) = DW(P)
;nd0: 2
;ns: 8 * n
;ds: >= 32
;td1: number of experiments
;FnMODE: States-TPPI (or TPPI)
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    gp 1 : gp 2
;                        -10 :  -60

;for z-only gradients:
;gpz1: -10%
;gpz2: -60%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
