;na_sfnoesy2d 
;avance-version (23/02/01)
;SOFAST 2D 1H/1H NOESY 
; 1H all(t1) - NOE - 1H imino (t2)
;
; for recording 2D 1H all/ 1H imino NOESY spectra
; using imino selective 1H pulses after NOESY transfer
; water is returned to +Z during NOESY mixing time via radiation damping
; optional 15N/13C decoupling and apodization weighted sampling (see ZG optioens)
; set o1p to center of 1H region (~9 ppm)
; (use parameterset NA_SFNOESY2D)

;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

prosol relations=<triple_na>

#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>

#ifdef AWS
#include <WeightedSampling.incl>
#endif

"d11=30m"
"d12=20u"

"in0=inf1"
"d0=in0/2-4*p1/PI"

#   ifdef CALC_SP
/* REBURP */
"p42=(bwfac26/(cnst55*bf1))*1000000" 
"spw26=plw1*(pow((p1*2/p42)/0.0798,2))"
"spoffs26=bf1*(cnst54/1000000)-o1" 	
"spoal26=0.5"

/* PC9 */
"p41=(bwfac27/(cnst55*bf1))*1000000"
"spw27=plw1*pow((p1*cnst3)/(p41*90.0*integfac27),2)"
"spoffs27=bf1*(cnst54/1000000)-o1" 	 
"spoal27=1"
#   endif /*CALC_SP*/

#   ifdef LABEL_CN
"TAU=d8-p16-d16-larger(p8,p32)/2-p1" 	
"DELTA=(larger(p8,p32)-2*p1-d0)/2"
"spoffs14=bf3*(cnst20/1000000)-o3"
#   else
"TAU=d8-p16-d16" 	
#   endif /*LABEL_CN*/

"DELTA1=p41*cnst39-de-4u"

"acqt0=0"
baseopt_echo

1 ze

#   ifdef LABEL_CN
2 d11 do:f3
#   else
2 d11
#   endif /*LABEL_CN*/

#   ifdef AWS
    subr qsin_2d:aws(4, 2)
#   endif /*AWS*/

3 d1 
  50u UNBLKGRAD
    p16:gp1
  d16 pl1:f1

#   ifdef LABEL_CN
  (center (DELTA p1 ph1 d0 p1 ph2 DELTA):f1 (p32:sp14 ph4):f3 (p8:sp13):f2)
#   else
  (p1 ph1 d0 p1 ph2):f1
#   endif /*LABEL_CN*/

  TAU 
  p16:gp2
  d16

  (p41:sp27 ph3):f1

  p19:gp3
  d16

  (p42:sp26 ph8)

  DELTA1
  p19:gp3

#   ifdef LABEL_CN
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2
#   else
  d16
  4u BLKGRAD
  go=2 ph31 
  d11 mc #0 to 2
#   endif /*LABEL_CN*/

     F1PH(calph(ph1, +90), caldel(d0, +in0)) 
exit

ph1= 0 2 
ph2= 0 0 0 0 2 2 2 2
ph3= 0 0 2 2 
ph4= 0
ph8= 0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16 : f3 channel - power level for CPD decoupling
;sp26: f1 channel - power level for shaped 180 degree pulse
;sp27: f1 channel - power level for shaped  90 degree pulse
;sp28: f1 channel - power level for shaped  90 degree pulse
;sp29: f1 channel - power level for shaped  90 degree pulse

;spnam13: 180 degree shaped pulse (adiabatic) for decoupling in F1
;spnam14: 180 degree shaped pulse (adiabatic) for decoupling in F1
;spnam26: Reburp.1000
;spnam27: Pc9_4_90.1000

;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse (adiabatic) for decoupling in F1 (sp13)
;p16: homospoil/gradient pulse                         [1 msec]
;p19: homospoil/gradient pulse 2                       [600 usec]
;p21 : f3 channel -  90 degree high power pulse
;p32: f3 channel - 180 degree shaped pulse (adiabatic) for decoupling in F1 (sp14)
;p41: f1 channel -   90 degree shaped pulse
;p42: f1 channel -  180 degree shaped pulse
;p43: f1 channel -   90 degree shaped pulse
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence

;d0 : incremented delay (F1 in 2D)                    
;d1 : relaxation delay [250-1000 us]
;d8 : NOESY mixing time
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery

;cnst3: flip angle after NOESY transfer in degree [90-110]
;cnst20: offset for adiabatic 15N decoupling in F1 (in ppm, 115 for amino + imino region)
;cnst39: compensation of chem. shift evolution during p39 (0.529), optimize for 0 first order phase in F2
;cnst54: center of imino region (in ppm)
;cnst55: imino 1H bandwidth (in ppm)


;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/SW(H) = 2 * DW(H)
;nd0: 1
;NS: 4 * n
;DS: >= 64
;td1: number of experiments in F1
;FnMODE: States-TPPI (or TPPI) in F1

;for z-only gradients:
;gpz1:  10%
;gpz2:  80%
;gpz3:  30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for 13C/15N decoupling start experiment with 
;             the option -DLABEL_CN (eda: ZGOPTNS)
;CALC_SP: for calculation of bandselective proton pulses based on p1/plw1
;             use option -DCALC_SP (eda: ZGOPTNS)
;AWS: use apodization weighted sampling (COS^2, ns=4*n),
;             process the spectrum without linear prediction in F1
;             option -DAWS (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1

