;noesydfphrl
;avance-version (12/01/11)
;2D homonuclear correlation via dipolar coupling
;dipolar coupling may be due to noe or chemical exchange
;with relay transfer and double quantum filter
;phase sensitive
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d4=1s/(cnst1*4)"
"d13=4u"


"in0=inf1"

"d0=in0/2-p1*4/3.1416"


1 ze
2 d1
3 p1 ph1
  d0
  p1 ph2
  d8
  p1 ph3
  d4
  p2 ph4
  d4
  p1 ph4
  d13
  p1 ph5
  go=2 ph31
  d1 mc #0 to 2 F1PH(calph(ph1, +90), caldel(d0, +in0))
exit


ph1=1 2 1 2 1 2 1 2 3 0 3 0 3 0 3 0
ph2=0 1 0 1 0 1 0 1 2 3 2 3 2 3 2 3 
    2 3 2 3 2 3 2 3 0 1 0 1 0 1 0 1
ph3=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 
    0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
ph4=0
ph5=0 0 2 2 3 3 1 1 0 0 2 2 3 3 1 1 
    0 0 2 2 3 3 1 1 0 0 2 2 3 3 1 1
    2 2 0 0 1 1 3 3 2 2 0 0 1 1 3 3 
    2 2 0 0 1 1 3 3 2 2 0 0 1 1 3 3
ph31=0 0 2 2 1 1 3 3




;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)
;d8 : mixing time
;d13: short delay                                    [4 usec]
;cnst1: = J(HH)
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 32 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
