;noesyesfbgpph
;avance-version (12/01/11)
;2D homonuclear correlation via dipolar coupling
;dipolar coupling may be due to noe or chemical exchange.
;phase sensitive
;water suppression using excitation sculpting with gradients
;with optional inversion of 13C and/or 15N during evolution and
;   decoupling during acquisition
;(use parameterset NOESYESFBGPPH)
;
;T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d11=30m"
"d12=20u"

#if   defined(LABEL_N) || defined(LABEL_CN)
"p22=p21*2"
#endif /*LABEL_N, LABEL_CN*/


"in0=inf1"

"d0=in0/2-p1*4/3.1416"


"TAU=de+p1*2/3.1416+54u"


"acqt0=0"
baseopt_echo


1 ze
2 d11 do:f2 do:f3
3 d1

#   ifdef LABEL_CN
  d12 pl1:f1 pl2:f2 pl3:f3
  (center (p1 ph1 d0 p1 ph2):f1 (p8:sp13 ph8):f2 (p22 ph8):f3)
#   else

#   ifdef LABEL_N
  d12 pl1:f1 pl3:f3
  (center (p1 ph1 d0 p1 ph2):f1 (p22 ph8):f3)
#   else
  d12 pl1:f1
  (p1 ph1 d0 p1 ph2):f1
#   endif /*LABEL_N*/

#   endif /*LABEL_CN*/

  d8
  p1 ph3

  50u UNBLKGRAD
  p16:gp1
  d16 pl0:f1
  (p12:sp1 ph4:r):f1
  4u
  d12 pl1:f1

  p2 ph5

  4u
  p16:gp1
  d16
  TAU
  p16:gp2
  d16 pl0:f1
  (p12:sp1 ph6:r):f1
  4u
  d12 pl1:f1

  p2 ph7

  4u
  p16:gp2

#   ifdef LABEL_CN
  d16 pl12:f2 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3 cpd2:f2
#   else

#   ifdef LABEL_N
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
#   else
  d16
  4u BLKGRAD
  go=2 ph31
#   endif /*LABEL_N*/

#   endif /*LABEL_CN*/

  d11 do:f2 do:f3 mc #0 to 2 F1PH(calph(ph1, +90), caldel(d0, +in0))
exit


ph1=0 0 2 2 
ph2=0
ph3=0 0 0 0 2 2 2 2 1 1 1 1 3 3 3 3
ph4=0 0 0 0 1 1 1 1
ph5=2 2 2 2 3 3 3 3
ph6=2 3
ph7=0 1
ph8=0
ph31=0 2 2 0 0 2 2 0 1 3 3 1 1 3 3 1


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1 : f1 channel - shaped pulse 180 degree
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p12: f1 channel - 180 degree shaped pulse (Squa100.1000)   [2 msec]
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 31%
;gpz2: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
