;noesyesgpphzs
;avance-version (12/01/11)
;2D homonuclear correlation via dipolar coupling
;dipolar coupling may be due to noe or chemical exchange.
;phase sensitive
;water suppression using excitation sculpting with gradients
;with gradient/rf spoil pulse in mixing time
;
;T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995)
;M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=



#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d12=20u"


"p31=5m"


"in0=inf1"

"d0=in0/2-p1*4/3.1416"


"TAU=d8-p32-p31-d16-84u"
"TAU1=de+p1*2/3.1416+4u"


"acqt0=0"
baseopt_echo


1 ze
2 d1
3 d12 pl1:f1
  p1 ph1
  d0
  p1 ph2             
  50u UNBLKGRAD
  10u gron0
  (p32:sp29 ph2):f1
  20u groff
  p31:gp1
  d16 pl1:f1
  TAU
  p1 ph3

  p16:gp2
  d16 pl0:f1
  (p40:sp10 ph4:r):f1
  4u
  d12 pl1:f1

  p2 ph5

  4u
  p16:gp2
  d16
  TAU1
  p16:gp3
  d16 pl0:f1
  (p40:sp10 ph6:r):f1
  4u
  d12 pl1:f1

  p2 ph7

  4u
  p16:gp3
  d16
  4u BLKGRAD

  go=2 ph31
  d1 mc #0 to 2 F1PH(calph(ph1, +90), caldel(d0, +in0))
exit


ph1= 0 0 2 2 
ph2= 0
ph3= 0 0 0 0 2 2 2 2 1 1 1 1 3 3 3 3
ph4= 0 0 0 0 1 1 1 1
ph5= 2 2 2 2 3 3 3 3
ph6= 2 3
ph7= 0 1
ph31=0 2 2 0 0 2 2 0 1 3 3 1 1 3 3 1


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;sp10: f1 channel - shaped pulse 180 degree
;sp29: f1 channel - shaped pulse (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p40: f1 channel - 180 degree shaped pulse (Squa100.1000)   [2 msec]
;p16: homospoil/gradient pulse
;p32: f1 channel - 180 degree shaped pulse (adiabatic)      [20 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;p31: gradient pulse 5                                      [5 msec]
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d12: delay for power switching                             [20 usec]
;d16: delay for homospoil/gradient recovery
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEC


;use gradient ratio:    gp 0 : gp 1 : gp 2 : gp 3
;                     ca. 10 :   40 :   31 :   11

;for z-only gradients:
;gpz0: ca. 10%
;gpz1: 40%
;gpz2: 31%
;gpz3: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;for sweepwidth of adiabatic shape and adjusting gpz0
;   see supplementary material of M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)



;$Id:$
