;noesyfbphpr
;avance-version (12/01/11)
;2D homonuclear correlation via dipolar coupling 
;dipolar coupling may be due to noe or chemical exchange.
;phase sensitive
;with presaturation during relaxation delay and mixing time
;with optional inversion of 13C and/or 15N during evolution and
;   decoupling during acquisition
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"d11=30m"
"d12=20u"


"in0=inf1"

"d0=in0/2-p1*4/3.1416"


"acqt0=-p1*2/3.1416"


1 ze
2 d11
3 d12 do:f2 do:f3
  d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1

#   ifdef LABEL_CN
  d12 pl1:f1 pl2:f2 pl3:f3
  (center (p1 ph1 d0 p1 ph2):f1 (p14:sp3 ph4):f2 (p22 ph4):f3)
#   else

#   ifdef LABEL_N
  d12 pl1:f1 pl3:f3
  (center (p1 ph1 d0 p1 ph2):f1 (p22 ph4):f3)
#   else
  d12 pl1:f1 
  (p1 ph1 d0 p1 ph2):f1
#   endif /*LABEL_N*/

#   endif /*LABEL_CN*/

  d12 pl9:f1
  d8 cw:f1
  4u do:f1

#   ifdef LABEL_CN
  d12 pl1:f1 pl12:f2 pl16:f3
  p1 ph3
  go=2 ph31 cpd3:f3 cpd2:f2
#   else

#   ifdef LABEL_N
  d12 pl1:f1 pl16:f3
  p1 ph3
  go=2 ph31 cpd3:f3
#   else
  d12 pl1:f1
  p1 ph3
  go=2 ph31
#   endif /*LABEL_N*/

#   endif /*LABEL_CN*/

  d11 do:f2 do:f3 mc #0 to 2 
     F1PH(calph(ph1, +90) & calph(ph29, +90), caldel(d0, +in0))
exit


ph1=0 2 
ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3=0 0 2 2 1 1 3 3
ph4=0
ph29=0
ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;LABEL_N: for N-15 labeled samples start experiment with 
;             option -DLABEL_N (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
