;noesygpphwgxf
;avance-version (19/02/08)
;2D homonuclear correlation via dipolar coupling
;dipolar coupling may be due to noe or chemical exchange
;phase sensitive
;selecting C-12 or N-14 bound protons in F1 and F2
;water suppression using watergate sequence
;(use parameterset NOESYGPPHWGXF)
;
;M. Ikura & A. Bax, J. Am. Chem. Soc. 114, 2433-2440 (1992)
;M. Piotto, V. Saudek & V. Sklenar, J. Biomol. NMR 2, 661 - 666 (1992)
;V. Sklenar, M. Piotto, R. Leppik $ V. Saudek, J. Magn. Reson.,
;   Series A 102, 241 -245 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d2=1s/(cnst2*2)"
"d11=30m"
"d12=20u"
"d21=1s/(cnst4*2)"

"p16=1m"
"p19=3m"


"in0=inf1"

"d0=3u"


"DELTA=d21-d2-larger(p2,p22)-p3"
"DELTA1=d2*2-d21-p21+larger(p2,p22)+p3-d0"
"DELTA2=d24-p16-p11-d12-8u"
"DELTA3=d21-d24-larger(p2,p22)-p3-p11-p16-d12-8u"
"DELTA4=d24*2-d21-p21+larger(p2,p22)+p3-4u"

"TAU=d8/2--p3/2-p21/2"
"TAU1=d8/2-p21/2-p19-4u"


1 ze
2 d11
3 d1 pl1:f1
  (p1 ph1)
  d2
  (p3 ph6):f2 
  (center (p2 ph2) (p22 ph7):f3 )
  DELTA
  (p21 ph6):f3
  DELTA1
  (p3 ph7):f2
  d0
  (p1 ph3)
  TAU UNBLKGRAD
  (p3 ph1):f2 
  (p21 ph1):f3
  4u
  p19:gp1
  TAU1
  (p1 ph4):f1
  4u
  p16:gp2
  DELTA2 pl0:f1
  (p11:sp1 ph5:r):f1
  4u
  d12 pl1:f1
  (p3 ph6):f2 
  (center (p2 ph1) (p22 ph7):f3 )
  4u
  d12 pl0:f1
  (p11:sp1 ph5:r):f1
  4u
  p16:gp3
  DELTA3
  (p21 ph9):f3
  DELTA4
  (p3 ph8):f2
  4u BLKGRAD
  go=2 ph31
  d11 mc #0 to 2 F1PH(calph(ph3, -90), caldel(d0, +in0))
exit


ph1=0
ph2=0 1 0 1 0 1 0 1 0 1 0 1 0 1 0 1
    2 3 2 3 2 3 2 3 2 3 2 3 2 3 2 3
ph3=0
ph4=0 0 1 1 2 2 3 3
ph5=2
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2 
ph7=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 
ph8=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 
    0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 
ph9=0 0 0 0 2 2 2 2
ph31=0 2 3 1 2 0 1 3


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;sp1 : f1 channel - shaped pulse  90 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse           [1 msec]
;p16: homospoil/gradient pulse                       [1 msec]
;p19: gradient pulse 2                               [3 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(CH))
;d8 : mixing time
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH))
;d24: 1/(2J'(CH))
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ


;use gradient ratio:	gp 1 : gp 2 : gp 3
; 		          50 :   30 :   30

;for z-only gradients:
;gpz1: 50%
;gpz2: 30%
;gpz3: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;$Id:$
