;noesygpphzs
;avance-version (12/10/08)
;2D homonuclear correlation via dipolar coupling 
;dipolar coupling may be due to noe or chemical exchange.
;phase sensitive
;with gradient/rf spoil pulse in mixing time
;
;M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)
;(J. Jeener, B.H. Meier, P. Bachmann & R.R. Ernst, J. Chem. Phys. 71,
;   4546-4553 (1979) )
;(R. Wagner & S. Berger, J. Magn. Reson. 123 A, 119-121 (1996) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p31=5m"


"in0=inf1"

"d0=in0/2-p1*4/3.1416"


"TAU=d8-p32-p31-d16-84u"


"acqt0=-p1*2/3.1416"


1 ze
2 d1
3 p1 ph1
  d0
  p1 ph2
  50u UNBLKGRAD
  10u gron0
  (p32:sp29 ph4):f1
  20u groff
  p31:gp1
  d16 pl1:f1
  4u BLKGRAD
  TAU
  p1 ph3
  go=2 ph31
  d1 mc #0 to 2 F1PH(calph(ph1, +90), caldel(d0, +in0))
exit


ph1=0 2 
ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3=0 0 2 2 1 1 3 3
ph4=0
ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3


;pl1 : f1 channel - power level for pulse (default)
;sp29: f1 channel - shaped pulse (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p31: gradient pulse 5                                  [5 msec]
;p32: f1 channel - 180 degree shaped pulse (adiabatic)  [20 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d16: delay for homospoil/gradient recovery
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ


;use gradient ratio:    gp 0 : gp 1
;                     ca. 10 :   40

;for z-only gradients:
;gpz0: ca. 10%
;gpz1: 40%

;use gradient files:   
;gpnam1: SMSQ10.100



;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;for sweepwidth of adiabatic shape and adjusting gpz0
;   see supplementary material of M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)



;$Id:$
