;noesygppr1d.2
;avance-version (12/01/11)
;with presaturation during relaxation delay
;   and spoil gradient
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>


"d12=20u"


"acqt0=-p0*2/3.1416"


1 ze
2 30m
  d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  50u UNBLKGRAD
  p16:gp1
  d16 pl1:f1
  p1 ph1
  4u
  p1 ph2
  p16:gp2
  d16
  d8
  4u BLKGRAD
  p0 ph3
  go=2 ph31
  30m mc #0 to 2 F0(zd)
exit


ph1=0 2 
ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3=0 0 2 2 1 1 3 3
ph29=0
ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p0 : for any flip angle
;p1 : f1 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4


;use gradient ratio:    gp 1 :  gp 2
;                         40 : -39.5

;for z-only gradients:
;gpz1: 40%
;gpz2: -39.5%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
