;noesygpps1d
;avance-version (12/01/11)
;1D with presaturation during relaxation delay and mixing time
;   and spoil gradient
;using shaped pulse for multiple solvent presaturation
;   (main solvent peak on resonance) during relaxation delay
;using cw presaturation during mixing time
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>


"d12=20u"


"if (d1/p18 < 1) {l6=1;} else {l6=d1/p18;}"


"acqt0=-p0*2/3.1416"


1 ze
2 30m

#   ifdef FLAG_BLK
  4u BLKGRAD
#   else
  4u
#   endif /*FLAG_BLK*/

3 p18:sp6:f1 ph29
  4u
  lo to 3 times l6

  50u UNBLKGRAD
  p16:gp1
  d16 pl1:f1
  p1 ph1
  4u
  p1 ph2
  d12 pl9:f1
  d8 cw:f1
  4u do:f1
  p16:gp2
  d16 pl1:f1

#   ifdef FLAG_BLK
  4u
#   else
  4u BLKGRAD
#   endif /*FLAG_BLK*/

  p0 ph3
  go=2 ph31
  30m mc #0 to 2 F0(zd)

#   ifdef FLAG_BLK
  4u BLKGRAD
#   else
  4u
#   endif /*FLAG_BLK*/

exit


ph1=0 2 
ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3=0 0 2 2 1 1 3 3
ph29=0
ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;sp6: f1 channel - shaped pulse for presaturation
;p0 : for any flip angle
;p1 : f1 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;p18: f1 channel - presaturation using shaped pulse
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;l6: p18 * l6 = total duration of presaturation
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4

;use 100msec pulse of square shape defined by 1000 points


;for z-only gradients:
;gpz1: 50%
;gpz2: -10%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



                                          ;preprocessor-flags-start
;FLAG_BLK: for BLKGRAD before d1 rather than go
;             option -DFLAG_BLK: (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
