;noesyhsqcedgpsism3d
;avance-version (21/09/15)
;NOESY-HSQC
;3D sequence with
;   homonuclear correlation via dipolar coupling 
;   dipolar coupling may be due to noe or chemical exchange.
;   H-1/X correlation via double inept transfer
;      using sensitivity improvement
;   simultaneous evolution of C-13 and N-15 chemical shift in t2
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho-TPPI gradient selection (t2)
;with decoupling during acquisition
;using trim pulses in inept transfer
;using shaped pulses for inversion on f2 - channel
;with editing between labelled and unlabelled part
;(use parameterset NOESYHSQCEDGPSISM3D)
;
;M. Sattler, M. Maurer, J. Schleucher & C. Griesinger, 
;   J. Biomol. NMR 5, 97-102 (1995)
;C. Eichmueller, W. Schueler, R. Konrat & B. Kraeutler,
;   J. Biomol. NMR 21, 107-116 (2001)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"p22=p21*2"
"d2=1s/(cnst2*2)"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"
"d26=1s/(cnst4*4)"
"d29=3u"

"d24=d4/2"


"d0=3u"
"d10=3u"

"in0=inf1/2"
"in10=inf2/2"

"in29=in30/2-in10"


"DELTA=d4-p8/2"
"DELTA1=d26-d4-p8/2"
"DELTA2=p16+d16+d29*2+p2+p3*2+p4+d10*4+p2*2+p1*6+16u"
"DELTA3=p16+d16+d10*2+p2+p1*2+6u"
"DELTA4=d4*0.5+p21+p1-p2-p22"
"DELTA5=d26-d4*0.5-p2-p22+p3-p4-(p21*0.27)"
"DELTA6=(p21*0.27)-(p1*0.27)"
"DELTA7=d26-d4*0.5"
"DELTA8=d0*2+larger(p8,p22)"
"DELTA9=p16+d16+8u"
"DELTA10=d21-p16-d16-p2/2"
"DELTA11=d2-p16-d16-p15/2"
"DELTA12=d21-d2-p15/2"
"DELTA13=d21-p16-d16-larger(p2,p22)/2"


"spoffs13=0"


"l0=1"


aqseq 321


1 ze
  d11 pl12:f2 pl16:f3
2 d1 do:f2 do:f3
3 d12 pl2:f2 pl3:f3

  50u UNBLKGRAD
  (p3 ph1):f2
  (p22 ph1):f3
  p16:gp1
  d16

  (p1 ph1)
  p16:gp2
  d16

  if "l0 %2 == 1"
     {
     DELTA10
     (p2 ph1)
     DELTA10
     }
  else
     {
     DELTA11
     (p15:sp18 ph1):f2
     DELTA12
     (center (p2 ph1) (p22 ph1):f3 )
     DELTA13
     }

  p16:gp2
  d16
  (p1 ph1)

  p19:gp3
  d16

  (p1 ph12)
  DELTA8
  (p2 ph12)
  d0
  (center (p8:sp13 ph1):f2 (p22 ph1):f3 )
  d0
  (p1 ph1)
  d8*0.5
  (center (p8:sp13 ph1):f2 (p22 ph1):f3 )
  d8*0.5

  (p1 ph1)
  DELTA 
  (p8:sp13 ph6):f2
  DELTA1
  (center (p2 ph1) (p22 ph7):f3 )
  d26

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) 

  4u
  p16:gp4
  d16 pl2:f2

  (p21 ph8):f3 
  4u
  p16:gp5*EA
  d16
  DELTA2
  (p22 ph8):f3
  d29
  (p1 ph2 3u p2 ph1 3u p1 ph2)
  d29
  (p3 ph3):f2
  d10 
  (p1 ph1 3u p2 ph2 3u p1 ph1) 
  d10
  p16:gp6*EA
  d16
  (p4 ph4):f2
  DELTA3
  (p3 ph4):f2 
  (p21 ph10):f3

  (p1 ph1) 
  d24
  (p4 ph1):f2
  (p2 ph1) 
  (p22 ph1):f3
  DELTA4
  (p3 ph5):f2
  DELTA7
  (p2 ph1) 
  (p22 ph1):f3
  DELTA5
  (p21 ph11):f3
  DELTA6
  (p1 ph2) 
  DELTA
  (p8:sp13 ph1):f2
  DELTA1
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph1)
  DELTA9
  (p1 ph2 3u p2 ph1 3u p1 ph2)
  4u
  p16:gp7
  d16 pl12:f2 pl16:f3
  4u BLKGRAD

  go=2 ph31 cpd2:f2 cpd3:f3
  d1 do:f2 do:f3 mc #0 to 2 

     F1PH(calph(ph12, +90), caldel(d0, +in0)) 
     F2I(iu0, 2)
     F2EA(calgrad(EA) & calph(ph5, +180) & calph(ph11, +180), caldel(d10, +in10) & caldel(d29, +in29) & calph(ph3, +180) & calph(ph6, +180) & calph(ph7, +180) & calph(ph8, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=3 3 1 1
ph6=0
ph7=0
ph8=2 0
ph10=0 0 2 2
ph11=1 1 3 3 
ph12=0 0 0 0 2 2 2 2
ph31=0 2 2 0 2 0 0 2
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;sp18: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p15: f2 channel - 180 degree shaped pulse in editing step (adiabatic)
;p16: homospoil/gradient pulse
;p19: gradient pulse 2                               [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse                        [1 msec]
;d0 : incremented delay (F1 in 3D)                   [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(CH))
;d4 : 1/(4J(CH))
;d8 : mixing time
;d10: incremented delay (F2 in 3D)                   [3 usec]
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d21: 1/(2J(NH))
;d24: = d4 / 2
;d26: 1/(4J(NH))
;d29: decremented delay (F2 in 3D)                   [3 usec]
;cnst2: = J(CH)
;cnst4: = J(NH)
;inf1: 1/SW(H) = 2 * DW(H)
;inf2: 1/SW(C) = 2 * DW(C)
;in0: 1/(2 * SW(H)) =  DW(H)
;nd0: 2
;in10: 1/(2 * SW(C)) = DW(C)
;nd10: 2
;in29: in30/2 - in10
;in30: 1/SW(N) = 2 * DW(N)
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: -20%
;gpz2: 30%
;gpz3: 50%
;gpz4: 60%
;gpz5: -47.63%
;gpz6: 32.37%
;gpz7: 8.14%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;use AU-program split [2 F2] to create separate datasets



;$Id: $
