;noesyhsqcetgp3d
;avance-version (21/09/15)
;NOESY-HSQC
;3D sequence with
;   homonuclear correlation via dipolar coupling 
;   dipolar coupling may be due to noe or chemical exchange.
;   H-1/X correlation via double inept transfer
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho-TPPI gradient selection (t2)
;using trim pulses in inept transfer
;with decoupling during acquisition
;using shaped pulses for inversion on f2 - channel
;allowing for CO decoupling in t2
;(use parameterset NOESYHSQCETGP3D)
;
;A.L. Davis, J. Keeler, E.D. Laue & D. Moskau, J. Magn. Reson. 98, 
;   207-216 (1992)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"

#   ifdef LABEL_CN
"p22=p21*2"
#   else
#   endif /*LABEL_CN*/


"d0=3u"
"d10=3u"

"in0=inf1/2"
"in10=inf2/2"


"DELTA2=d4-larger(p2,p8)/2-p16-de-8u"
"DELTA3=d4-larger(p2,p8)/2"
"DELTA4=d4-larger(p2,p8)/2-p1*2/PI"

#   ifdef FLAG_CODEC
"TAU=larger(p22,p24)"
#   else
"TAU=p22"
#   endif /*FLAG_CODEC*/

#   ifdef LABEL_CN
"DELTA=larger(p8,p22)+d0*2"

#   ifdef FLAG_CODEC
"DELTA1=p16+d16+larger(p2,TAU)+d10*2-p24-4u"
#   else
"DELTA1=p16+d16+larger(p2,TAU)+d10*2"
#   endif /*FLAG_CODEC*/

#   else
"DELTA=p8+d0*2"
"DELTA1=p16+d16+p2+d10*2"
#   endif /*LABEL_CN*/


"spoffs9=bf2*(cnst21/1000000)-o2"


"acqt0=0"
baseopt_echo


aqseq 321


1 ze
  d11 pl12:f2
2 d1 do:f2
3 d12
  (p1 ph7)
  DELTA
  (p2 ph8)
  d0

#   ifdef LABEL_CN
  (center (p8:sp13 ph1):f2 (p22 ph1):f3 )
#   else
  (p8:sp13 ph1):f2
#   endif /*LABEL_CN*/

  d0
  (p1 ph1):f1
  d8
  (p1 ph1):f1
  DELTA3
  4u
  (center (p2 ph1) (p8:sp13 ph6):f2 )
  4u
  DELTA3 pl2:f2 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2)

  (p3 ph3):f2
  d10 

#   ifdef LABEL_CN

#   ifdef FLAG_CODEC
  (center (p2 ph5) (p24:sp9 ph1):f2 (p22 ph1):f3 )
#   else
  (center (p2 ph5) (p22 ph1):f3 )
#   endif /*FLAG_CODEC*/

#   else
  (p2 ph5)
#   endif /*LABEL_CN*/

  d10
  p16:gp1*EA
  d16 pl2:f2
  (p4 ph4):f2

#   ifdef FLAG_CODEC
  DELTA1
  (p24:sp9 ph1):f2
  2u
  2u pl2:f2
#   else
  DELTA1
#   endif /*FLAG_CODEC*/

  (p3 ph4):f2

  (p1 ph1)
  DELTA4
  (center (p2 ph1) (p8:sp13 ph1):f2 )
  4u
  p16:gp2
  DELTA2 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 
     F1PH(calph(ph7, +90) & calph(ph8, +90), caldel(d0, +in0)) 
     F2EA(calgrad(EA), caldel(d10, +in10) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 0 2 2
ph4=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph5=0 0 0 0 2 2 2 2
ph6=0
ph7=0 2
ph8=1 3
ph31=0 2 2 0 0 2 2 0 2 0 0 2 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp9: f2 channel - shaped pulse 180 degree  (CO on resonance)
;     sp9 requires higher selectivity - refocussing CO only
;sp13: f2 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p8: f2 channel - 180 degree shaped pulse for inversion
;p16: homospoil/gradient pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse (CO, selective)
;p28: f1 channel - trim pulse
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d8 : mixing time
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;inf1: 1/SW(H) = 2 * DW(H)
;inf2: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(H)) =  DW(H)
;nd0: 2
;in10: 1/(2 * SW(X)) = DW(X)
;nd10: 2
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;FLAG_CODEC: additional CO decoupling in t2
;             option -DFLAG_CODEC (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
