;noesyhsqcf3gpwgx13d
;avance-version (12/01/11)
;NOESY-HSQC
;3D sequence with
;   homonuclear correlation via dipolar coupling
;   dipolar coupling may be due to noe or chemical exchange
;   H-1/N-15 correlation via double inept transfer
;   with N-15 (and C-13) filter in F1
;
;   H[(C12),N14] (t1) -> N15 (t2) -> H[N15] (t3)
;
;phase sensitive (t1)
;phase sensitive (t2)
;with decoupling during acquisition
;with gradient pulses in mixing time
;using flip-back pulses
;water suppression using watergate sequence
;using f3 - channel
;with C-13 refocussing in t1
;(use parameterset NOESYHSQCF3GPWGX13D)
;
;A.L. Breeze, Prog. NMR Spectrosc. 36, 323-372 (2000)
;C. Zwahlen, P. Legault, S.J.F. Vincent, J. Greenblatt, R. Konrat &
;   L.E. Kay, J. Am. Chem. Soc. 119 6711-6721 (1997)
;K. Ogura, H. Terasawa & F. Inagaki, J. Biomol. NMR 8, 492-498 (1996)
;J. Iwahara, J.M. Wojciak & R.T. Clubb, J. Biomol. NMR 19, 231-241 (2001)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d26=1s/(cnst4*4)"
"d28=1s/(cnst6*4)"
"d29=1s/(cnst7*4)"


"d0=5u"
"d10=3u"

"in0=inf1/2"
"in10=inf2/2"


"DELTA1=d26-p16-d16-p11-12u"
"DELTA4=d26-p19-d16"
"DELTA7=p8+d0*2+10u"

#   ifdef LABEL_CN
"DELTA=larger(p2,p8)+d10*2"
"DELTA2=d28-p19-d16-p15/2"
"DELTA3=d26-d28-p15/2"
"DELTA5=d29-p19-d16-p15/2"
"DELTA6=d26-d29-p15/2"
#   else
"DELTA=p2+d10*2"
#   endif /*LABEL_CN*/


"TAU=d8-p16-d16"


aqseq 321


1 ze
  d11 pl16:f3
2 d11 do:f3
3 d1 pl1:f1

  (p1 ph1)
  p19:gp4
  d16 pl3:f3

#   ifdef LABEL_CN
  DELTA2
  (p15:sp18 ph1):f2
  DELTA3
#   else
  DELTA4
#   endif /*LABEL_CN*/

  (center (p2 ph2) (p22 ph1):f3 )
  DELTA4
  p19:gp4
  d16
  (p1 ph11)

#   ifdef LABEL_CN
  4u pl2:f2
  (p3 ph12):f2
#   else
#   endif /*LABEL_CN*/

  (p21 ph12):f3
  p16:gp5
  d16

  (p1 ph1)
  p19:gp6
  d16

#   ifdef LABEL_CN
  DELTA5
  (p15:sp18 ph1):f2
  DELTA6
#   else
  DELTA4
#   endif /*LABEL_CN*/

  (center (p2 ph2) (p22 ph1):f3 )
  DELTA4
  p19:gp6
  d16
  (p1 ph11)

#   ifdef LABEL_CN
  4u pl2:f2
  (p3 ph12):f2
#   else
#   endif /*LABEL_CN*/

  (p21 ph12):f3
  p16:gp7
  d16

  (p1 ph7)
  DELTA7
  (p2 ph13)
  d0 gron0
  5u groff
  (p8:sp13 ph1):f2
  d0 gron0*-1
  5u groff
  (p1 ph8)
  TAU UNBLKGRAD
  p16:gp8
  d16
  (p1 ph9)
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph2) 

  4u pl0:f1
  (p11:sp1 ph10):f1
  4u
  p16:gp1
  d16 pl1:f1

  (p21 ph3):f3
  d10 

#   ifdef LABEL_CN
  (center (p2 ph6) (p8:sp13 ph1):f2 )
#   else
  (p2 ph6)
#   endif /*LABEL_CN*/

  d10
  (p22 ph4):f3
  DELTA
  (p21 ph4):f3

  p16:gp2
  d16 pl0:f1
  (p11:sp1 ph5):f1
  4u
  4u pl1:f1

  (p1 ph1)
  4u
  p16:gp3
  d16
  DELTA1 pl0:f1
  (p11:sp1 ph5):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u pl0:f1
  (p11:sp1 ph5):f1
  4u
  DELTA1
  p16:gp3
  d16 pl16:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3
  d11 do:f3 mc #0 to 2 
     F1PH(calph(ph7, +90) & calph(ph13, +90), caldel(d0, +in0))
     F2PH(calph(ph3, +90), caldel(d10, +in10))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=2
ph6=0 0 2 2
ph7=0 0 0 0 2 2 2 2
ph8=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
     2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph9=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph10=2 2 2 2 2 2 2 2 0 0 0 0 0 0 0 0
ph11=2
ph12=0 1 2 3
ph13=1 1 1 1 3 3 3 3
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2
 

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1 : f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;spnam13: Crp60,0.5,20.1
;sp18: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p15: f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse                       [1 msec]
;p19: gradient pulse 2                               [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (F1 in 3D)                   [5 usec]
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d10: incremented delay (F2 in 3D)                   [3 usec]
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d26: 1/(4J(NH))
;d28: 1/(4*J(CH)min)
;d29: 1/(4*J(CH)max)
;cnst4: = J(NH)
;cnst6: = 1J(CH)min
;cnst7: = 1J(CH)max
;inf1: 1/SW(H) = 2 * DW(H)
;inf2: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;in10: 1/(2 * SW(N)) = DW(N)
;nd10: 2
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 0 : gp 1 : gp 2 : gp 3 :  gp 4 : gp 5 : 
;			   2 :    5 :   50 :   30 :     3 :   11 :
;                          gp 6 : gp 7 : gp 8
;                             2 :    7 :    9

;for z-only gradients:
;gpz0: 2%
;gpz1: 5%
;gpz2: 50%
;gpz3: 30%
;gpz4: 3%
;gpz5: 11%
;gpz6: 2%
;gpz7: 7%
;gpz8: 9%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam8: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;for p15:sp18 use either "Crp60,0.5,20.1" or adiabatic pulse 
;   with matched sweep 
;for matched sweep use 
;   low to high field sweep, 
;   carrier shifted to center of spectrum (75 ppm) via spoffs18
;   d28 = d29 = 1/(4*J(CH) center of spectrum [1.696 ms])



;$Id:$
