;noesyigld1d
;avance-version (13/03/08)
;1D version of noesyph with inverse gated decoupling
;using low power decoupling
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>


"d11=30m"


"acqt0=-p1*2/3.1416"


1 ze
  d11 pl14:f2
2 30m do:f2
  d1
  p1 ph1
  4u
  p1 ph2
  d8
  p1 ph3
  go=2 ph31 cpd2:f2
  30m do:f2 mc #0 to 2 F0(zd)
exit


ph1=0 2 
ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3=0 0 2 2 1 1 3 3
ph29=0
ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3


;pl1 : f1 channel - power level for pulse (default)
;pl14: f2 channel - power level for low power decoupling
;p1 : f1 channel -  90 degree high power pulse
;p61: f2 channel - 90 degree pulse for low power decoupling
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d11: delay for disk I/O                             [30 msec]
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence: waltz64.p61



;$Id:$
