;noesyph11
;avance-version (12/01/11)
;2D homonuclear correlation via dipolar coupling 
;dipolar coupling may be due to noe or chemical exchange.
;phase sensitive
;water suppression using 1-1 pulse sequence
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"in0=inf1"

"d0=in0/2-p1*4/3.1416"


1 ze
2 d1
3 p1 ph1
  d0
  p1 ph2
  d8
  p1 ph3
  d19
  p0 ph4
  go=2 ph31
  d1 mc #0 to 2 F1PH(calph(ph1, +90), caldel(d0, +in0)) 
exit


ph1=(8) 7 
ph2=2
ph3=0 0 2 2 1 1 3 3
ph4=2 2 0 0 3 3 1 1
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;p0 : f1 channel -  90 degree high power pulse
;                   use for fine adjustment
;p1 : f1 channel -  90 degree high power pulse
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d19: delay for binomial water suppression
;     d19 = (1/(2*d)), d = distance of next null (in Hz)
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States or QSEQ


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
