;noesyphrv
;avance-version (23/03/20)
;2D homonuclear correlation via dipolar coupling 
;dipolar coupling may be due to noe or chemical exchange.
;phase sensitive
;using random variation of mixing time
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>

define delay d8_orig


"d8_orig=d8"

"in0=inf1"

"d0=in0/2-p1*4/3.1416"


"acqt0=-p1*2/3.1416"


1 ze
2 d1
  "d8=random(d8orig,cnst8)"
3 p1 ph1
  d0
  p1 ph2
  d8
  p1 ph3
  go=2 ph31
  d1 mc #0 to 2 F1PH(calph(ph1, +90), caldel(d0, +in0))
exit


ph1=0 2 
ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3=0 0 2 2 1 1 3 3
ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time (cnst8 - random variation)
;cnst8: random variation of mixing time d8 in %  [5 %]
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
