;noesypr1d
;avance-version (12/01/11)
;1D version of noesyphpr
;with presaturation during relaxation delay and mixing time
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"d11=30m"
"d12=20u"


"acqt0=-p1*2/3.1416"


1 ze
2 30m
  d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  p1 ph1
  4u
  p1 ph2
  d12 pl9:f1
  d8 cw:f1
  4u do:f1
  d12 pl1:f1
  p1 ph3
  go=2 ph31
  30m mc #0 to 2 F0(zd)
exit


ph1=0 2 
ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3=0 0 2 2 1 1 3 3
ph29=0
ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4



;$Id:$
