;noesyzs_hxineptgpphsp
;avance-version (20/07/29)
;2D heteronuclear shift correlation via dipolar coupling
;dipolar coupling may be due to noe or chemical exchange.
;phase sensitive
;with gradient/rf spoil pulse in mixing time
;
;M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=



#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p4=p3*2"

"d3=1s/(cnst2*cnst11)"
"d4=1s/(cnst2*4)"

"d11=30m"

"p31=5m"


"in0=inf1"

"d0=in0/2-p3*4/PI"


"DELTA1=de"
"DELTA2=p1*2/PI"
"DELTA3=d3-cnst17*p13/2-4u"
"DELTA4=d4-larger(p4,p26)/2"


"TAU=d8-p53-p31-d16-30u"


"acqt0=0"
baseopt_echo


1 ze
  d11 pl12:f2
2 d11 do:f2
3 d1
  20u pl2:f2
  50u UNBLKGRAD

  p16:gp1
  d16 

  (center (p26:sp8 ph1) (p3 ph3 d0 p3 ph4):f2 )

  10u gron0
  (p53:sp44 ph4):f2
  20u groff
  p31:gp3
  d16 pl2:f2
  TAU

  (p3 ph1):f2
  DELTA4
  (center (p26:sp8 ph1) (p4 ph1):f2 )
  DELTA4
  (p3 ph2):f2

  p16:gp2
  d16 pl1:f1

  (p1 ph1)
  DELTA1
  DELTA3
  4u
  (center (p13:sp5 ph1) (p4 ph1):f2 )
  DELTA3 pl12:f2
  DELTA2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2
     F1PH(calph(ph3, +90), caldel(d0, +in0))
exit


ph1=0
ph2=1 3
ph3=0 0 2 2
ph4=0 0 0 0 2 2 2 2
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp5: f1 channel - shaped pulse (180degree)
;spnam5: Crp60comp.4  (Crp80comp.4)
;sp8: f1 channel - shaped pulse (180degree)
;spnam8: Crp60,0.5,20.1 (Crp80,0.5,20.1
;sp44: f1 channel - shaped pulse (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p13: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                          [1 msec]
;p26: f1 channel - 180 degree shaped pulse
;p31: gradient pulse                                    [5 msec]
;p53: f1 channel - 180 degree shaped pulse (adiabatic)  [20 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;d0 : incremented delay (2D): in0/2-p3*4/PI
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(J(XH)*cnst11)
;d4 : 1/(4J(XH))
;d8 : mixing time
;d11: delay for disk I/O                                [30 msec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;cnst11: = 6.9  XH, XH2, XH3 positive
;          4.0  XH only
;          2.667  XH, XH3 positive, XH2 negative
;cnst17: = -0.5 for Crp60comp.4
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz0: ca. 10%
;gpz1: 50% 
;gpz2: 30% 
;gpz3: 40% 

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


;cnst17: Factor to compensate for coupling evolution during a pulse
;       (usually +1). A positive factor indicates that coupling
;       evolution continues during the pulse, whereas a negative
;       factor is necessary if the coupling is (partially) refocussed.


;for sweepwidth of adiabatic shape and adjusting gpz0
;   see supplementary material of M.J. Thrippleton & J. Keeler,
;   Angew. Chem. Int. Ed. 42, 3938-3941 (2003)


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
