;$Id:$
;pulse program for pulse nutation using inp1 on f1 channel with high power proton decoupling
;$COMMENT=acquisition on X with proton decoupling, various decoupling schemes
;$CLASS=Solids HWT
;$TYPE=direct excitation
;$DIM=2D
;$HIDE=y

prosol relations=<solids_default>

"d0=0"
"d12=20u"

# ifdef lg
#include <lgcalc.incl>
# endif

"acqt0=-p1/2"
"inf1=inp1"

d0
 1 ze
 2 d1 do:f2
30 (p1 ph1):f1 (1u cpds2):f2
   go=2 ph31
   d12 do:f2 ipu1
   30m mc #0 to 2 F1QF()
   HaltAcqu, 1m
exit

ph1= 0 2 1 3
ph31=0 2 1 3

;pl1 : f1 channel - power level for pulse (default)
;pl2 : =0W, not used
;pl12 : power level for standard proton decoupling e.g. spinal64
;pl13 : special decoupling power e.g. spinal64_13
;p1 : f1 channel -  90 degree high power pulse
;p5 : LG 360 degree pulse
;p10 : pulse length for phase modulated pulses (e.g PMLG, DUMBO)
;p22 : H 180 at power level pl13 (pidec)
;p29 : 5 - 10 us, to avoid exact rotor synchronisation
;pcpd2 : pulse length in decoupling sequence (often 180deg-0.2us)
;d1 : relaxation delay; 1-5 * T1
;d30 : =1s/cnst31-p4, for pidec12 and pidec13, pi-pulse decoupling
;d31 : =1s/cnst31, 1 rotor period
;spnam1	: lgs-1, lgs-4 or pmlg-36,
;l31 : number of rotor cycles for XiX (=3)
;cnst20 : proton RF field to calculate LG parameters
;cnst21 : =0, proton offset
;cnst22 : +ve Lee-Goldburg offset
;cnst23 : -ve Lee-Goldburg offset
;cnst24 : additional Lee-Goldburg offset
;cnst31 : spinning frequency
;cpdprg2 : sequence used for decoupling (e.g. spinal64)
;zgoptns : -Dlg, -Dlacq, -Dlcp15
;FnMODE: QF
