;zggpbp
;1D sequence with gradients to check gradient coil vibration 
;
;$CLASS=HighRes HWT
;$DIM=1D
;$HIDE=y

#include <Avance.incl>
#include <Grad.incl>

"d11=30m"
"d12=20u"

"acqt0=-p1*2/3.1416" 

1 ze

2 30m
  4u BLKGRAD
  d1
  50u UNBLKGRAD

  p16:gp1
  d16 

  p16:gp2 
  d16 pl1:f1 

  p1 ph1
  go=2 ph31
  30m mc #0 to 2 F0(zd)
  4u BLKGRAD  
exit

ph1=0 2 2 0 1 3 3 1
ph29=0
ph31=0 2 2 0 1 3 3 1

;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery

;for z-only gradients:
;gpz1: 75%
;gpz2: -75%

;use gradient files:   
;gpnam1: RECT.1
;gpnam2: RECT.1
