;$Id:$
;1D sequence with f2 decoupling
;using p0 for any flip angle
;$CLASS=HighRes HWT
;$DIM=1D
;$HIDE=y

#include <Avance.incl>

"d11=30m"
"p0=cnst10*p1/90"
"acqt0=-p0*2/3.1416"

1 ze
  d11 pl12:f2
2 30m do:f2
  d11 cpd2:f2
  d1
  p0 ph1
  go=2 ph31
  30m do:f2 mc #0 to 2 F0(zd)
exit

ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1

;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p0 : for any flip angle
;cnst10: = flip angle in degree
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;NS: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
