;$Id:$
;1D sequence with inverse gated decoupling
;using f2 - and f3 - channel
;$CLASS=HighRes HWT
;$DIM=1D
;$HIDE=y

#include <Avance.incl>

"d11=30m"
"p0=cnst10*p1/90"
"acqt0=-p0*2/3.1416"

1 ze
  d11 pl12:f2 pl16:f3
2 30m do:f2 do:f3
  d1
  p0 ph1
  go=2 ph31 cpd2:f2 cpd3:f3
  30m do:f2 do:f3 mc #0 to 2 F0(zd)
exit

ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1

;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;p0 : f1 channel -  high power pulse for any flipangle
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;NS: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence
