;quatd
;avance-version (12/01/11)
;unprotonated X-nuclei only
;with decoupling during acquisition
;
;M.R. Bendall & D.T. Pegg, J. Magn. Reson. 53, 272 (1983)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d2=1s/(cnst2*2)"


1 ze
  30m pl12:f2 
  30m cpd2:f2
2 30m
  d1
  4u do:f2
  p1 ph1 
  d2 pl2:f2
  (center (p2 ph2) (p3 ph3):f2 )
  d2 pl12:f2
  go=2 ph31 cpd2:f2
  30m mc #0 to 2 F0(zd)
  d2 do:f2
exit


ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph2=0 2 1 3 1 3 2 0 1 3 0 2 0 2 1 3
ph3=0 0 0 0 2 2 2 2
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;cnst2: = J(XH)
;ns: 4 * n, total number of scans: NS * TD0
;ds: 4
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
