;reset_ZS_1d
;avance-version (14/08/29)
;pseudo 2D sequence
;broadband homodecoupling using a Zangger-Sterk element
;
;K. Zangger & H. Sterk, J. Magn. Reson. 124, 486-489 (1997)
;J.A. Aguilar, S. Faulkner, M. Nilsson & G.A. Morris, 
;   Angew. Chem. Int. Ed. 49, 3901-3903 (2010)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"d11=30m"
"d12=20u"


"in0=dw*l31"

"d0=3u"


"DELTA2=l31*2*dw"
"DELTA3=p16+d16+d0*2+de+dw*2*l30+5u"


"l29=2*l31*td1"


1 ze
2 d11
3 d12

  d1 pl1:f1
  50u UNBLKGRAD

  (p1 ph3):f1
  4u
  (p44:sp30 ph4):f1

  d0
  p16:gp1*0.5
  d16

  (p44:sp30 ph5):f1

  p16:gp1*-0.5
  d16
  DELTA3
  (p47:sp34 ph2):f1 (p47:gp0)
  5u
  p16:gp1*-1.0
  d16
  d0

  4u BLKGRAD
  go=2 ph31

  d11 mc #0 to 2
    F1QF(caldel(d0, +in0))

  DELTA2
exit


ph2=0 1
ph3=0 0 2 2
ph4=0 0 0 0 1 1 1 1
ph5=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;sp30: f1 channel - shaped pulse 180 degree (Bip720,50,20.1)
;sp34: f1 channel - shaped pulse 180 degree for Zangger-Sterk element
;p1 : f1 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;p44: f1 channel - 180 degree shaped pulse for refocussing
;p47: f1 channel - 180 degree shaped pulse for Zangger-Sterk element
;d0 : incremented delay (2D)                                [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                                    [30 msec]
;d12: delay for power switching                             [20 usec]
;d16: delay for homospoil/gradient recovery
;l29: total number of points in reconstructed FID
;l30: number of complex points at the beginning not to be included 
;        in reconstruction
;l31: number of complex points along the acquisition dimension per block
;        block length about 8 to 10ms
;in0: = dw*l31
;ns: 1 * n, total number of scans: NS * TD0
;ds: 4
;FnMODE: QF



;for z-only gradients:
;gpz0: 2%
;gpz1: 19%

;use gradient files:
;gpnam0: RECT.1
;gpnam1: SMSQ10.100



;use AU-program proc_reset to process data



;$Id:$
