;reset_happy_festa

;heteronuclear 1D spin echo with gradients
;using selective refocussing with a shaped pulse
;uses spherical randomization prior to d1
;evolving heteronuclear coupling to antiphase
;using DIPSI2 sequence for mixing
;with option for zero quantum suppression
;uses PSYCHE for interferogram pure shift

; G. Dal Poggetto, J. V. Soares & C. F. Tormena, Anal. Chem. 2020, 92, 20, 1404714053

 
; ZGOPTNS:
; -DZQF : uses Thrippleton-Keeler's zero-quantum suppresion filter
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=Homodecoupling
;$SUBTYPE=Reset
;$COMMENT=19F to 1H selective TOCSY experiment combined with PSYCHE homodecoupling, use AU-program proc_reset or xaua to process data
				 	 ;run wvm -q before zg or launch with xaua

#include <De.incl>
#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>

define delay BETA
define delay SWi
define pulse P_in


create_shape(sp12, rsnob, name= sel180_1H, stepSize= 10.0 us, bandwidth= $cnst12 Hz, offset= $cnst16 ppm)
create_shape(sp24, iburp2, name= sel180_19F_1, stepSize= 10.0 us, bandwidth= $cnst14 Hz, offset= $cnst15 ppm)
create_shape(sp25, iburp2, name= sel180_19F_2, stepSize= 10.0 us, bandwidth= $cnst14 Hz, offset= $cnst15 ppm, timeReversal=true)
"d11=30m+1s/(cnst12)-1s/(cnst12)"
"d11=30m+1s/(cnst14)-1s/(cnst14)"
"d11=30m+1s/(cnst15)-1s/(cnst15)"
"d11=30m+1s/(cnst16)-1s/(cnst16)"

"FACTOR1=(d9/(p6*115.112))/2"
"l1=FACTOR1*2"

define delay tauJ
define delay tau

"l31=d24/(2*dw)" 
"in0=dw*l31"
"d0=0"
"p11=p40"
"tauJ=in0/2-p16-d16-50u"
"tau=dw*2*l30"
"DELTA=d24*td1"

"cnst62=(cnst61/360)*sqrt((2*cnst60)/(p45/2000000))"
"P_in = 1000000.0 / (cnst62*4)"
"BETA = cnst62 / (2.27 * 2) "
"cnst63= (P_in/p1) * (P_in/p1)"
"spw37=plw1/cnst63"

"d4=(1s*(0.5)/(cnst2*cnst3))" 
"DELTA=d4*0.5"
"spoal12=0.5" 
"spoal14=1"
"spoal15=0"
"d11=30m"
"d12=20u"
"p2=2*p1"
"p4=2*p3"
"p8=1m"
"p18=1m"
"acqt0 = 0"
baseopt_echo

1 ze
  d11
  d11 pl2:f2

2 d11
  d12 
  d12 pl1:f1
  10u UNBLKGRAD
  p8 ph21
  p8 ph22
  p16:gp8*-1
  d16 BLKGRAD
  50u LOCKH_OFF
  d1 
  50u LOCKH_ON
  10u UNBLKGRAMP

3 (p1 ph1):f1
  10u 
  10u pl0:f2
  p14:sp24:f2 ph2
  10u 
  10u pl0:f1
  DELTA
  p16:gp1
  d16
  p12:sp12:f1 ph3
  p16:gp1
  d16 
  10u 
  10u pl0:f2
  p14:sp25:f2 ph2
  10u 
  10u pl1:f1
  DELTA
  (p1 ph4):f1
  
# ifdef ZQF

   10u pl0:f1 
   10u gron0

   (p32:sp29 ph5):f1
   20u groff
   
# endif /*ZQF*/

  100u pl10:f1
  
               ;begin DIPSI2
4 p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
 
  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25
  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25
  p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
 lo to 4 times l1
               ;end DIPSI2
			   
  p16:gp2*-1
  
# ifdef ZQF

   d16 pl0:f1 
   10u gron10*1.33
   (p32*0.75:sp29 ph5):f1
    20u groff 
	
# endif /*ZQF*/

  100u pl1:f1 
  200u
  (p1 ph6):f1
  
5 d0
  tauJ
  50u
  p16:gp3
  d16
  (p2 ph7):f1
  50u
  p16:gp3
  d16
  tauJ
  tau
  50u
  p16:gp4
  d16
  10u pl0:f1
  d16
  (center (p45:sp37 ph8):f1 (p45:gp11)) ;PSYCHE element
  d16
  10u pl1:f1
  p16:gp4
  d16
  50u BLKGRAMP
  d0
  
  go=2 ph31
  d11 mc #0 to 2
  F1QF(id0)
  DELTA
  50u LOCKH_OFF
exit

ph1=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph2=0
ph3=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph4=1 3
ph5=0
ph6=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 2 
2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph7=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 
0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 
0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 
0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2 2 2 
2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 
2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 
2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 
2 2 2 2 2 2 2 2 2 2 2 2 2
ph8=0 0 1 1 0 0 1 1 0 0 1 1 0 0 1 1 0 0 1 1 0 0 1 1 0 0 1 1 0 0 1 1 0 
0 1 1 0 0 1 1 0 0 1 1 0 0 1 1 0 0 1 1 0 0 1 1 0 0 1 1 0 0 1 1 2 2 3 3 
2 2 3 3 2 2 3 3 2 2 3 3 2 2 3 3 2 2 3 3 2 2 3 3 2 2 3 3 2 2 3 3 2 2 3 
3 2 2 3 3 2 2 3 3 2 2 3 3 2 2 3 3 2 2 3 3 2 2 3 3 
ph21=0
ph22=1
ph23=3
ph25=1
ph29=0
ph31=0 2 2 0 2 0 0 2 0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0 2 0 0 2 0 2 2 0 2 
0 0 2 0 2 2 0 2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2 0 2 2 0 2 0 0 2


;pl0 : zero power (0W)
;pl1 : f1 channel - power level for hard pulse (default)
;pl2 : f2 channel - power level for hard pulse (default)
;plw10 : f1 channel - power level for TOCSY transfer
;sp12 : f1 channel - power level of refocusing shaped pulse
;spw14 : f2 channel - power level of inversion shaped pulse
;spw15 : f2 channel - power level of time-reversed inversion shaped pulse
;sp29: power level for shaped pulse (adiabatic)
;sp37: power levelr for shaped pulse 180 degree of psyche element (Crp_psyche.20)

;p1 : f1 channel - 90 degree high power pulse 
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel - 90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p6 : f1 channel - 90 degree low power pulse for TOCSY
;p8 : f1 channel - Spherical randomization pulse [1-1.5 msec]
;p12 : f1 channel - 180 degree refocusing shaped pulse
;p14 : f2 channel - 180 degree inversion shaped pulse
;p15 : f2 channel - 180 degree inversion shaped pulse
;p32: 180 degree shaped pulse (adiabatic)    [20 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;p45 : f1 channel - duration of double-chirp PSYCHE pulse element [30 ms]

;p11 : duration of weak gradient during PSYCHE pulse element [p11=p10]
;p16 : duration of CTP gradients [200 us - 1 ms] 
;p17 : duration of CTP gradients [1 ms]
;p18 : homospoil gradient [1 msec]

;d0 : chemical shift evolution for pure shift
;d1 : relaxation delay; [5*T1 s]
;d4 : delay for J(HX) evolvution
;d9 : TOCSY mixing time [50-200 ms]
;d11 : delay for disk I/O [30 msec]
;d16 : recovery delay for echo gradients 
;d24: chunk duration [10-25 ms]
;DELTA: total duration of reconstructed FID

;spnam12 : f1 channel - file name for the selective 180 refocusing shaped pulse [RSNOB]
;spnam24 : f2 channel - file name for the selective 180 inversion shaped pulse [Iburp2]
;spnam25 : f2 channel - file name for the selective 180 inversion shaped pulse [Iburp2]
;spnam32 : f1 channel - file name for the adiabatic shaped pulse using in first ZQF [CHIRP]
; smoothed chirp (low to high, 20% smoothing, 1000 points, 20KHz)
;spnam34 : f1 channel - file name for the adiabatic shaped pulse using in last ZQF [CHIRP]
; smoothed chirp (low to high, 20% smoothing, 1000 points, 20KHz)
;spnam37 : f1 channel - file name for double-chirp PSYCHE pulse element [SALTIRE]

;cnst2: selected J(HX) (in Hz)
;cnst3 : number of X coupled with selected proton 
;cnst6: bandwidth of TOCSY transfer
;cnst12: f1 channel - bandwidth for selective refocussing pulse (in Hz)
;cnst14: f2 channel - bandwidth for selective inversion pulse (in Hz)
;cnst15: f2 channel - chemical shift for selective inversion 19F pulse (in ppm) 
;cnst16: f2 channel - chemical shift for selective refocussing 1H pulse (in ppm)
;cnst20 : desired flip angle for PSYCHE pulse element (degree) [10-25] 
;cnst21 : bandwidth of each chirp in PSYCHE pulse element (Hz) [10000 Hz]
;cnst53: GammaB1 of first adiabatic ZQF shaped pulse 
;cnst54: GammaB1 of last adiabatic ZQF shaped pulse 
;cnst60: sweepwidth of single chirp element in Crp_psyche.20 in Hz [10000]
;cnst61: desired flip angle in degree (ca. 20)
;cnst62: gammaB1/2PI value for p49:sp37 (in Hz)
;cnst63: scaling factor for power (sp37)

;l30: number of complex points at the beginning not to be included 
;        in reconstruction
;l31: number of complex points along the acquisition dimension per block
;BETA: flip angle (ca. 20 degree)
;SWi: sweep width in the pseudo dimension 
;        should be 2 to 3 times the width of the widest multiplett
;in0: = dw*l31

;l1 : loop for DIPSI cycle: ((p6*115.112) * l1) = mixing time
;ns: 8 * n, total number of scans: NS * TD0
;ds: 8
;td1 : number of t1 increments for pure shift dimension
;in0 : 1/(2 * SW) = DW
;nd0 : 2
;MC2 : QF


;for z-only gradients:
;gpz0 :  3%  (first ZQF gradient [1-3%])
;gpz1 : 13%  (CTP gradient)
;gpz2 : 49%  (Spoil gradient)
;gpz3 : 79%  (CTP gradient)
;gpz4 : 43%  (CTP gradient)
;gpz8 : 31%  (CTP gradient)
;gpz10:  3%  (last ZQF gradient [1-3%])
;gpz11:  1%  (PSYCHE ZQF gradient [1-3%])

;use gradient files:
;gpnam1 : SMSQ10.100
;gpnam2 : SMSQ10.100
;gpnam3 : SINE.100
;gpnam4 : SINE.100
;gpnam8 : SMSQ10.100 
;gpnam11: RECT.1 

;run wvm -q before zg or launch with xaua
;use AU-program proc_reset or xaup to process data


