;1D homonuclear Hartman-Hahn transfer using 
;   DIPSI2 sequence for mixing
;   using selective refocussing with a shaped pulse
;with zero quantum suppression
; combined with the PSYCHE homodecoupling method for scalar coupling suppression

; Dal Poggetto, G.; Castañar, L.; Morris, G. A.; Nilsson, M.; RSC Adv. 2016, 6, 100063.
; Foroozandeh, M.; Adams, R. W.; Meharry, N. J.; Jeannerat, D.; Nilsson, M.; Morris, G. A. Angew. Chem. Int. Ed. 2014, 53, 6990.
; Thrippleton, M.J.; Keeler,  J.; Angew. Chem. Int. Ed. 2003, 42, 3938.
; Kessler,H.; Oschkinat, H.; Griesinger, C.; Bermel, W.; J. Magn. Reson. 1986, 70, 106.

;$CLASS=HighRes
;$DIM=1D 
;$TYPE=
;$SUBTYPE=
;$COMMENT=



#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>

define delay tauJ
define delay tau
define delay BETA
define delay SWi
define pulse P_in


"l31=d24/(2*dw)" 
"in0=dw*l31"
"p2=p1*2"
"DELTA=d24*td1"

"SWi=1000000/(l31*2*dw)"

"tauJ=dw*l31/2-p16-d16"
"tau=(dw*2*l30)+d16"

"spoffs34=bf1*(cnst21/1000000)-o1"
"spoffs29=0"
"spoffs37=0"

"cnst62=(cnst61/360)*sqrt((2*cnst60)/(p49/2000000))"
"P_in = 1000000.0 / (cnst62*4)"
"BETA = cnst62 / (2.27 * 2) "
"cnst63= (P_in/p1) * (P_in/p1)"
"spw37=plw1/cnst63"


"FACTOR1=(d9/(p6*115.112))/2"
"l1=FACTOR1*2"


1 ze
2 30m
  20u pl1:f1 BLKGRAD
  d1
  50u UNBLKGRAD
  (p1 ph1):f1
  3u
  p16:gp1
  d16 
  p47:sp34:f1 ph2:r		
  3u
  p16:gp1
  d16 pl1:f1
						  	     	
  p1 ph3
  10u gron0
  (p32:sp29 ph3):f1
  20u groff
  d16 pl10:f1
						 		;begin DIPSI2	
3 p6*3.556 ph23 
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  
  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph25
  p6*4.556 ph23
  p6*3.222 ph25
  p6*3.167 ph23
  p6*0.333 ph25
  p6*2.722 ph23
  p6*4.167 ph25
  p6*2.944 ph23
  p6*4.111 ph25

  p6*3.556 ph23
  p6*4.556 ph25
  p6*3.222 ph23
  p6*3.167 ph25
  p6*0.333 ph23
  p6*2.722 ph25
  p6*4.167 ph23
  p6*2.944 ph25
  p6*4.111 ph23
  lo to 3 times l1 
							;end DIPSI2
						   	 	
  p16:gp2
  d16
  10u gron10*1.33
  (p32*0.75:sp29 ph3):f1
  20u groff
  d16 pl1:f1
  p1 ph3	


4 d0							
  tauJ
  p16:gp3 
  d16
  p2 ph4 
  p16:gp3 
  d16
  tauJ
  p16:gp4 
  d16
  tau
  ( center (p49:sp37 ph5):f1 (p49:gp11) )	
  d16
  p16:gp4 
  d16 BLKGRAD
  d0								
						    		
  go=2 ph31
  30m mc #0 to 2 F1QF(caldel(d0, +in0))
  DELTA
exit


ph1= 0 2
ph2= 0 0 1 1 2 2 3 3
ph3= 0
ph4= 0
ph5= 0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
ph23=3
ph25=1
ph31=0 2 2 0 0 2 2 0 2 0 0 2 2 0 0 2


;pl1  : power level for pulse (default)
;pl10 : power level for TOCSY-spinlock

;sp12 : power level for refocusing shaped pulse
;sp37: power levelr for shaped pulse 180 degree of psyche element (Crp_psyche.20)
;sp29: power level for shaped pulse (adiabatic)

;p1  : 90 degree high power pulse
;p2  : 180 degree high power pulse
;p6  : 90 degree low power pulse
;p47 : 180 degree refocusing shaped pulse
;p16 : duration of CTP gradients for PSYCHE					[1ms]
;p32: 180 degree shaped pulse (adiabatic)    [20 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;p49: 180 degree shaped pulse for psyche element  [30 msec]
;                      Crp_psyche.20

;d0  : incremented delay 
;d1  : relaxation delay 								[5*T1 s]
;d9  : TOCSY mixing time 							[50-200 ms]
;d16 : recovery delay for gradients in PSYCHE block 				[200us-1ms]
;d24: chunk duration [10-25 ms]
;DELTA: total duration of reconstructed FID

;spnam34 : file name for the selective 180 refocusing shaped pulse 		[RSNOB or REBURP]
;spnam37: Crp_psyche.20

;cnst60: sweepwidth of single chirp element in Crp_psyche.20 in Hz   [10000]
;cnst61: desired flip angle in degree (ca. 20)
;cnst62: gammaB1/2PI value for p49:sp37 (in Hz)
;cnst63: scaling factor for power (sp37)
;cnst21: chemical shift for selective pulse (offset, in ppm)

;BETA: flip angle (ca. 20 degree)
;SWi: sweep width in the pseudo dimension 
;        should be 2 to 3 times the width of the widest multiplett
;l30: number of complex points at the beginning not to be included 
;        in reconstruction
;l31: number of complex points along the acquisition dimension per block
;        block length (DELTA2) about 8 to 10ms (kappa)


;use gradient files
;gpnam1 : SMSQ10.100
;gpnam2 : SMSQ10.100
;gpnam3 : SINE.100
;gpnam4 : SINE.100
;gpnam11: RECT.1

;for z-only gradients
;gpz0 : first ZQF gradient 								[1%]
;gpz1 : CTP gradient 									[13%]
;gpz2 : CTP gradient 									[31%]
;gpz3 : CTP gradient 									[77%]
;gpz4 : CTP gradient 									[49%]
;gpz10: last ZQF gradient 								[2%]
;gpz11: weak gradient during PSYCHE element 						[1-3%]


;ns  : 8 * n, total number of scans: NS * TD0
;ds  : 8
;nd0 : 2
;l1  : loop for DIPSI cycle: ((p6*115.112) * l1) = mixing time


;pocess with proc_reset
