;rexcpmgtc2d
;avance-version (23/06/28)
;  
; for measuring 19F R(exchange) using a CPMG train
; heating compensation after acquisition time
; interleaved recording of FIDs
; as pseudo2D
;
; Set ns to 16. Total number of scans is set by l1 (= l1 * ns).
; CPMG relaxation delay length is set by d20. CPMG frequencies are 
; given via a vd list, list entries are in Hz (e.g. an entry 100 in the 
; vd list corresponds to 100 Hz CPMG frequency). CPMG frequencies actually
; used in the pulse sequence are rounded to multiples of 1/d20 (in Hz).
; To ensure an even number of 180 degree pulses during the CPMG delay, the CPMG 
; frequencies should be set to multiples of 1/d20 (displayed as cnst50 in the 
; pulse program). For measuring I0 (signal intensity in the absence of the CPMG 
; relaxation delay) set the first entry in the vd list to 0. 
;
; use parameterset (19FREXCPMGTC2D)
;
; J.H. Overbeck, W. Kremer, R. Sprangers, J Biomol NMR 74, 753-766 (2020) 

;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>

define list<delay> RF_field=<$VDLIST>
define loopcounter COUNTER2
define delay RF_max
"RF_max=0"

"l2=ns*l1"
"l3=td1"

"p2=p1*2"

"d11=30m"
"d21=d20/2"
"d31=0"
"d32=0"
"d50=1u*l2"
"if ( de > p1*2/PI ) { DELTA1 = de - p1*2/PI + 4u; DELTA2 = 4u; } else { DELTA2 = p1*2/PI - de + 4u; DELTA1 = 4u; }"

"cnst50=1/d20"
"nbl=td1"

"acqt0=0"
baseopt_echo

1 ze
  30m
  if "td1 != RF_field.len" 
     {
     20u
     print "Warning: td1 is not equal to the number of CPMG frequencies in the vdlist"
     }

9 20u
  if "RF_field > RF_max"
    {
    20u
    "RF_max=RF_field"
    }

   if "1 > ((RF_field/cnst50) - trunc(RF_field/cnst50))*cnst50 || (1-((RF_field/cnst50) - trunc(RF_field/cnst50)))*cnst50 < 1"
     {
     }
  else
     {
     2u
     print "CPMG frequencies are not multiples of 1/d20 and will be rounded to multiples of 1/d20"
     }
  3m RF_field.inc
  lo to 9 times l3

  3m RF_field.res
  "d31=RF_max"
  "COUNTER=d20*d31"
  "RF_max=COUNTER/(d20)"
  "d31=RF_field[0]"
  "COUNTER=0"

2 6m
3 d11
  3m
5 1m
  
; start of heating compensation (applied for a duration of d20, at a CPMG frequency
; corresponding to the difference of RF_max and the current value of d31
; (d31: CPMG frequency of the previous experiment))

  if "abs(RF_max-d31) > 0.1"
    { 
    20u
    "d32=RF_max-d31"
    20u
    "COUNTER=d20*d32"
    20u
    "d32=COUNTER/(d20)"
    20u
    "TAU=(1 / (d32*4) ) - p1/1000000"
    } 

  if "abs(RF_max-d31) < 0.1"
    {
    d20
    80u
    }
  else
    {   
10  TAU
    (p2 ph4)
    TAU
    TAU
    (p2 ph4)
    TAU
    lo to 10 times COUNTER
    }
; heating compensation end

  "d31 = RF_field"
  20u
  "if (d31 == 0) \
     { \
     COUNTER=0; \
     TAU=1s;\
     TAU2=1s;\
     } \
  else \
     { \
     COUNTER=d20*d31; \
     d31=COUNTER/(d20); \
     TAU=(1 / (d31*4) ) - p1/1000000; \
     COUNTER2=COUNTER*2-1; \
     TAU2=TAU-de; \
     }"

; purge residual magnetization before d1
  50u UNBLKGRAD
  p16:gp1
  d16
  p1 ph4
  p16:gp2
  d16

  d1 BLKGRAD

  p1 ph1
  DELTA1
  p2 ph2
  DELTA2
  if "COUNTER > 0"
  {
  de
7 TAU
  (p1*2 ph3):f1
  TAU
  lo to 7 times COUNTER2
  TAU
  (p1*2 ph3):f1
  TAU2
  }

; start of acquisition
  goscnp ph31
  3m RF_field.inc
  3m st
  lo to 2 times nbl
  3m ipp1 ipp2 ipp3 ipp31
  3m  RF_field.res
  lo to 3 times ns 
  d11 wr #0
  3m  zd
  lo to 5 times l1
  d50

exit

ph1= 0 2
ph2= 0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph3= 1 1 3 3
ph4= 0
ph31=0 2 0 2 2 0 2 0

;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel - 90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse   [1 msec]

;l1: l1 * ns = total number of scans (see l2)
;l2: = total number of scans

;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O [30 msec]
;d16: delay for homospoil/gradient recovery [200 us]
;d20: CPMG relaxation delay
;d31: used for internal calculations
;d32: used for internal calculations
;d50: used for internal calculations
;TAU: variable CPMG pulse spacing

;cnst50: 1/d20, set CPMG frequencies to multiples of this value

;ns: 16 
;ds: 8

;FnMODE: QF(no freq) in F1

;for z-only gradients:
;gpz1: 15%
;gpz2: 30%
;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100

;$Id:$