;roesy2_hxineptgpphsp
;avance-version (20/06/19)
;2D heteronuclear shift correlation
;   ROESY with cw spinlock for mixing
;spinlock using 180x 180-x pulses
;phase sensitive
;
;(A. Bax & D.G. Davis, J. Magn. Reson 63, 207-213 (1985) )
;(T.-L. Hwang & A.J. Shaka, J. Am. Chem. Soc. 114, 3157-3159 (1992) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p4=p3*2"

"d3=1s/(cnst2*cnst11)"
"d4=1s/(cnst2*4)"

"d11=30m"


"in0=inf1/2"

"d0=3u"


"DELTA1=de"
"DELTA2=p1*2/PI"
"DELTA3=d3-cnst17*p13/2-4u"
"DELTA4=d4-larger(p4,p26)/2"
"DELTA5=d0*2+p26+4u-p3*2/PI"


"l4=p15/(p25*2)"


"acqt0=0"
baseopt_echo


1 ze
  d11 pl12:f2
2 d11 do:f2
3 d1
  20u pl2:f2
  50u UNBLKGRAD

  p16:gp1
  d16 

  (p3 ph3):f2
  DELTA5
  (p4 ph6):f2
  d0
  (p26:sp8 ph1)
  d0 
  4u pl27:f2

4 (p25 ph4):f2
  (p25 ph5):f2
  lo to 4 times l4

  4u pl2:f2

  DELTA4
  (center (p26:sp8 ph1) (p4 ph1):f2 )
  DELTA4
  4u
  (p3 ph2):f2

  p16:gp2
  d16 pl1:f1

  (p1 ph1)
  DELTA1
  DELTA3
  4u
  (center (p13:sp5 ph1) (p4 ph1):f2 )
  DELTA3 pl12:f2
  DELTA2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2
     F1PH(calph(ph3, +90) & calph(ph6, +90), caldel(d0, +in0))
exit


ph1=0
ph2=1 3
ph3=0 0 2 2
ph4=0 0 0 0 2 2 2 2
ph5=2 2 2 2 0 0 0 0
ph6=1

ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl27: f1 channel - power level for pulsed ROESY-spinlock
;sp5: f1 channel - shaped pulse (180degree)
;spnam5: Crp60comp.4  (Crp80comp.4)
;sp8: f1 channel - shaped pulse (180degree)
;spnam8: Crp60,0.5,20.1 (Crp80,0.5,20.1
;p1 : f1 channel -  90 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p13: f1 channel - 180 degree shaped pulse
;p15: f1 channel - pulse for ROESY spinlock
;p16: homospoil/gradient pulse                         [1 msec]
;p26: f1 channel - 180 degree shaped pulse
;p25: f1 channel - 180 degree pulse at pl27
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(J(XH)*cnst11)
;d4 : 1/(4J(XH))
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;cnst11: = 6.9  XH, XH2, XH3 positive
;          4.0  XH only
;          2.667  XH, XH3 positive, XH2 negative
;cnst17: = -0.5 for Crp60comp.4
;l4: loop for spinlock = p15 / p25*2
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50% 
;gpz2: 30% 

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


;cnst17: Factor to compensate for coupling evolution during a pulse
;       (usually +1). A positive factor indicates that coupling
;       evolution continues during the pulse, whereas a negative
;       factor is necessary if the coupling is (partially) refocussed.


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
