;roesyadjs_hxineptgpphsp
;avance-version (21/09/15)
;2D heteronuclear shift correlation
;   with jump-symmetrized with adiabatic spinlocks for mixing
;phase sensitive
;
;(C.M. Thiele, K. Petzold & J. Schleucher, 
;   Chem. Eur. J. 15, 585-588 (2009) )
;(J. Schleucher, J. Quant, S. Glaser & C. Griesinger, 
;   J. Magn. Reson A 112, 144-151 (1995) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define pulse P_SL


"cnst24=1000000.0*tan((cnst28*2*PI)/360.0)/(inf1*2)"

"if ( cnst24 > 6500 ) {cnst25 = 6400.0;} else {cnst25 = cnst24;}"
"if ( cnst24 > 6500 ) {cnst29 = atan(cnst25*2*inf1/1000000.0)*360.0/(2*PI);} else {cnst29=cnst28;}"

"if (cnst26<cnst25) {cnst27=cnst25;} else {if (cnst26>6500) {cnst27=6400;} else {cnst27=cnst26;} }"


"cnst30=abs(cnst27/tan((cnst29*2*PI)/360.0))"


define list<frequency> roesylist={sfo hz, 0.0, cnst30, -cnst30, 0.0}


"p30=1000000.0/(cnst27*4)"

"cnst31= (p30/p3) * (p30/p3)"

"spw12=plw2/cnst31"
"spw13=plw2/cnst31"
"spw16=plw2/cnst31"
"spw17=plw2/cnst31"
"spw41=plw2/cnst31"

"cnst23=cnst30+cnst31+p30"


"p4=p3*2"

"d3=1s/(cnst2*cnst11)"
"d4=1s/(cnst2*4)"

"d11=30m"

"p41=1m"


"in0=inf1"

"d0=in0/2-p3*4/PI"


"P_SL=p15/2"


"DELTA1=de"
"DELTA2=p1*2/PI"
"DELTA3=d3-cnst17*p13/2-4u"
"DELTA4=d4-larger(p4,p26)/2"


"spoffs12=0"
"spoffs13=0"
"spoffs16=0"
"spoffs17=0"
"spoffs41=0"


"acqt0=0"
baseopt_echo


1 ze
  d11 pl12:f2
2 d11 do:f2
3 d1
  20u pl2:f2
  20u roesylist:f2
  4u roesylist.inc
  50u UNBLKGRAD

  p16:gp1
  d16 

  (center (p26:sp8 ph1) (p3 ph3 d0 p3 ph4):f2 )

  4u
  p16:gp3
  d16 roesylist:f2
  4u roesylist.inc

  (p41:sp12 ph5):f2
  (P_SL:sp41 ph5):f2
  (p41:sp13 ph5):f2

  4u
  4u roesylist:f2
  4u roesylist.inc

  (p41:sp16 ph5):f2
  (P_SL:sp41 ph5):f2
  (p41:sp17 ph5):f2

  4u
  p16:gp4
  d16 roesylist:f2
  4u roesylist.inc
  4u pl2:f2

  (p3 ph1):f2
  DELTA4
  (center (p26:sp8 ph1) (p4 ph1):f2 )
  DELTA4
  (p3 ph2):f2

  p16:gp2
  d16 pl1:f1

  (p1 ph1)
  DELTA1
  DELTA3
  4u
  (center (p13:sp5 ph1) (p4 ph1):f2 )
  DELTA3 pl12:f2
  DELTA2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2
     F1PH(calph(ph3, +90), caldel(d0, +in0))
exit


ph1=0
ph2=1 3
ph3=0 0 2 2
ph4=0 0 0 0 2 2 2 2
ph5=0
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp5: f1 channel - shaped pulse (180degree)
;spnam5: Crp60comp.4  (Crp80comp.4)
;sp8: f1 channel - shaped pulse (180degree)
;spnam8: Crp60,0.5,20.1 (Crp80,0.5,20.1
;sp12: f1 channel - shaped pulse for adiabatic ramp down (lowfield, positive offset) (= pl2 + cnst31)
;spnam12: Gaussramp+down.1
;sp13: f1 channel - shaped pulse for adiabatic ramp up (lowfield, positive offset) (= pl2 + cnst31)
;spnam13: Gaussramp+up.1
;sp16: f1 channel - shaped pulse for adiabatic ramp down (highfield, negative offset) (= pl2 + cnst31)
;spnam16: Gaussramp-down.1
;sp17: f1 channel - shaped pulse for adiabatic ramp up (highfield, negative offset) (= pl2 + cnst31)
;spnam17: Gaussramp-up.1
;sp41: f1 channel - shaped pulse for ROESY-spinlock (= pl2 + cnst31)
;spnam41: Squa100.1000
;p1 : f1 channel -  90 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p13: f1 channel - 180 degree shaped pulse
;p15: f1 channel - pulse for ROESY spinlock
;p16: homospoil/gradient pulse                         [1 msec]
;p26: f1 channel - 180 degree shaped pulse
;p30: f1 channel -  90 degree pulse at sp41
;p41: f1 channel - shaped pulse for adiabatic ramp     [1 msec]
;d0 : incremented delay (2D): in0/2-p3*4/PI
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(J(XH)*cnst11)
;d4 : 1/(4J(XH))
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;cnst11: = 6.9  XH, XH2, XH3 positive
;          4.0  XH only
;          2.667  XH, XH3 positive, XH2 negative
;cnst17: = -0.5 for Crp60comp.4
;cnst23; (for display purpose only)
;cnst24: min. RF field strength to make sure that the carrier is shifted
;           to the edge of the spectrum
;cnst25: reduced min. RF field strength in case an upper limit of 6.5kHz is exceeded
;           (set to 6.4kHz), this leads to a recalculation of the tilt angle (cnst29)
;cnst26: requested RF field strength (gammaB1) for ROESY spinlock
;           reduced to 6.4kHz if an upper limit of 6.5kHz is exceeded
;cnst27: used RF field strength (gammaB1) for ROESY spinlock
;cnst28: requesetd tilt angle for ROESY spinlock (between axis of spinlock and z-axis) [45 degree]
;cnst29: used tilt angle for ROESY spinlock (between axis of spinlock and z-axis)
;cnst30: low and highfield offset,
;          calculated from gammaB1 (cnst27) for tilt angle (cnst29)
;cnst31: difference in power level (dB) for spinlock relative to pl2
;inf1: 1/SW(H) = 2 * DW(H)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50% 
;gpz2: 30% 
;gpz3: 31%
;gpz4: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100


;cnst17: Factor to compensate for coupling evolution during a pulse
;       (usually +1). A positive factor indicates that coupling
;       evolution continues during the pulse, whereas a negative
;       factor is necessary if the coupling is (partially) refocussed.


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id: $
