;scosyph
;avance-version (12/01/11)
;soft 2D COSY using shaped pulse for excitation
;phase sensitive
;O1 in the middle of the region to be excited during t1 and t2
;
;R. Brueschweiler, J.C. Madsen, C. Griesinger, O.W. Sorensen &
;   R.R. Ernst, J. Magn. Reson. 73, 380 - 385 (1987)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"d12=20u"
"d13=4u"


"in0=inf1"

"d0=3u"


1 ze
2 d1
3 d12 
  p11:sp1:f1 ph1
  d13
  d12 pl1:f1
  d0
  p0 ph2
  go=2 ph31
  d1 mc #0 to 2 F1PH(calph(ph1, +90), caldel(d0, +in0))
exit


ph1=0 0 2 2 1 1 3 3
ph2=0 2 2 0 1 3 3 1
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;sp1: f1 channel - shaped pulse
;p0 : f1 channel -  20 to 90 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ



;$Id:$
