;selcogprl
;avance-version (21/09/15)
;1D relayed COSY using selective refocussing with a shaped pulse
;
;G. Eich, G. Bodenhausen, and R. R. Ernst,J. Am. Chem. Soc. 104, 3731-3732 (1982)
;G. Wagner, J. Magn. Reson. 55, 151 (1983)
;C.J. Bauer, R. Freeman, T. Frenkiel, J. Keeler & A.J. Shaka,
;   J. Magn. Reson. 58, 442 (1984)
;H. Kessler, H. Oschkinat, C. Griesinger & W. Bermel,
;   J. Magn. Reson. 70, 106 (1986)
;J. Stonehouse, P. Adell, J. Keeler & A.J. Shaka, J. Am. Chem. Soc 116,
;   6037 (1994)
;K. Stott, J. Stonehouse, J. Keeler, T.L. Hwang & A.J. Shaka,
;   J. Am. Chem. Soc 117, 4199-4200 (1995)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>


"p2=p1*2"
"d4=1s/(cnst1*4)"
"d20=1s/(cnst10*4)"


#   ifdef CALC_SPOFFS
"spoffs2=bf1*(cnst21/1000000)-o1"
#   else
#   endif /*CALC_SPOFFS*/


"acqt0=-p1*2/PI"


1 ze
2 30m
  
#   ifdef FLAG_BLK
  4u BLKGRAD
#   else
  4u  
#   endif /*FLAG_BLK*/

  d1 pl1:f1
  50u UNBLKGRAD
  (p1 ph1):f1
  4u
  p16:gp1
  d16
  p12:sp2:f1 ph2:r
  4u
  p16:gp1
  d16
  d4 pl1:f1 
  4u
  (p2 ph3):f1
  d4

#   ifdef FLAG_BLK
  4u  
#   else
  4u BLKGRAD
#   endif /*FLAG_BLK*/

  (p1 ph3):f1

  d20
  (p2 ph4):f1
  d20
  (p1 ph5):f1

  go=2 ph31
  30m mc #0 to 2 F0(zd)

#   ifdef FLAG_BLK
  4u BLKGRAD
#   else
  4u  
#   endif /*FLAG_BLK*/

exit


ph1=1 3
ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3=0
ph4=0 0 2 2
ph5=0 0 0 0 2 2 2 2
ph31=0 2


;pl1 : f1 channel - power level for pulse (default)
;sp2: f1 channel - shaped pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                            [1 msec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1 / 4J(HH)
;d16: delay for homospoil/gradient recovery
;d20: 1 / 4J'(HH) for second transfer
;cnst1 : = J(HH)
;cnst10: = J'(HH)
;cnst21: chemical shift for selective pulse (offset, in ppm)
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4


;phcor 2 : phasedifference between power levels sp1 and pl1 

;choose p12 according to desired selectivity
;the flip-angle is determined by the amplitude
;set O1 on resonance on the multiplet to be excited or use spoffs


;use gradient ratio:    gp 1
;                         15

;for z-only gradients:
;gpz1: 15%

;use gradient files:   
;gpnam1: SMSQ10.100



                                          ;preprocessor-flags-start
;CALC_SPOFFS: automatically calcuate spoffs for selective pulses
;             start experiment with option -DCALC_SPOFFS (eda: ZGOPTNS)
;FLAG_BLK: for BLKGRAD before d1 rather than go
;             option -DFLAG_BLK: (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
