;selhsqcetgpnosp
;avance-version (21/09/15)
;HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;using shaped pulses for inversion on f2 - channel
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d4=1s/(cnst2*4)"
"d11=30m"


"DELTA1=d4-larger(p2,p14)/2-4u"
"DELTA2=d4*2-p16-d16-4u"
"DELTA3=p16+d16+de-p1*2/PI+4u"


"TAU=d8/2-p16-d16"


#   ifdef CALC_SPOFFS
"spoffs26=bf2*(cnst22/1000000)-o2"
#   else
#   endif /*CALC_SPOFFS*/


"acqt0=0"
baseopt_echo


1 ze
  d11 pl12:f2
2 d11 do:f2 
3 d1
  (p1 ph1)
  DELTA1
  4u
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  DELTA1 pl2:f2 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) 

  p16:gp3
  d16 pl19:f1

  (p3 ph3):f2
  p16:gp1*-1
  d16
  DELTA2
  4u cpds1:f1
  (p36:sp26 ph1:r):f2
  4u do:f1
  DELTA2
  p16:gp1
  d16 pl1:f1 pl2:f2
  (p3 ph4):f2

  (p1 ph1) 
  DELTA1
  4u
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  DELTA1
  (p1 ph5)
 
  TAU
  p16:gp4
  d16
  (p2 ph1)
  p16:gp4*-1
  d16
  TAU

  (p1 ph1)
  DELTA3
  (p2 ph2)
  p16:gp2
  d16 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 F0(zd)
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=1 1 3 3
ph31=0 2 2 0 2 0 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse 180 degree
;sp26: f2 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;p16: homospoil/gradient pulse
;p28: f1 channel - trim pulse
;p36: f2 channel - 180 degree shaped pulse
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;cnst22: chemical shift for selective pulse (offset, in ppm)
;ns: 2 * n, total number of scans: NS * TD0
;ds: >= 16
;cpd1: decoupling according to sequence defined by cpdprg1
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 40.2%
;gpz3: 50%
;gpz4: 31%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: $
