;selina
;avance-version (21/09/15)
;1D INADEQUATE using selective excitation with a shaped pulse
;
;H. Kessler, H. Oschkinat, C. Griesinger & W. Bermel,
;   J. Magn. Reson. 70, 106 (1986)
;S. Berger, Angew. Chem. Int. Ed. Engl. 27, 1196 (1988)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d4=1s/(cnst3*4)"
"d11=30m"


#   ifdef CALC_SPOFFS
"spoffs1=bf1*(cnst21/1000000)-o1"
#   else
#   endif /*CALC_SPOFFS*/


1 ze
  d11 pl12:f2 
  d11 cpd2:f2
2 30m pl1:f1
  d1 
  p1 ph1
  d4
  p2 ph2
  d4
  p1 ph1
  4u pl0:f1
  p11:sp1:f1 ph3:r
  go=2 ph31
  30m pl1:f1 mc #0 to 2 F0(zd)
  d11 do:f2
exit


ph1=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
    2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph2=0 2 0 2 0 2 0 2 1 3 1 3 1 3 1 3
ph3=0 0 1 1 2 2 3 3 1 1 2 2 3 3 0 0
    2 2 3 3 0 0 1 1 3 3 0 0 1 1 2 2
ph31=0 0 3 3 2 2 1 1 1 1 0 0 3 3 2 2
     2 2 1 1 0 0 3 3 3 3 2 2 1 1 0 0


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(CC))
;d11: delay for disk I/O                             [30 msec]
;cnst3: = J(CC)
;cnst21: chemical shift for selective pulse (offset, in ppm)
;ns : 32 * n, total number of scans: NS * TD0
;ds : 4
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;phcor 3 : phasedifference between power levels sp1 and pl1 

;choose p11 according to desired selectivity
;the flip-angle is determined by the amplitude
;set O1 on resonance on the multiplet to be excited or use spoffs



;$Id: $
