;selineptlrrdsp
;avance-version (21/09/15)
;selective INEPT for polarization transfer via longrange couplings
;with decoupling during acquisition
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"d12=20u"


"DELTA1=(1s/(cnst13*4))-larger(p13,p36)/2-p13/2-cnst17*p13/2"
"DELTA2=(1s/(cnst13*cnst11))-larger(p13,p36)/2-p13/2-cnst17*p13/2-p1*2/PI-4u"
"DELTA3=(1s/(cnst13*cnst11))-larger(p13,p36)/2-p13/2-cnst17*p13/2-de-4u"


#   ifdef CALC_SPOFFS
"spoffs26=bf2*(cnst22/1000000)-o2"
#   else
#   endif /*CALC_SPOFFS*/


"acqt0=0"
baseopt_echo


1 ze 
2 30m do:f2 
  d1
  d12 pl2:f2 
  (p3 ph1):f2 
  4u
  DELTA1
  (center (p13:sp5 ph4) (p36:sp26 ph2):f2 )
  DELTA1
  4u pl1:f1 pl2:f2
  (p3 ph3):f2 
  (p1 ph5) 
  DELTA2
  4u
  (center (p13:sp5 ph6) (p36:sp26 ph2):f2 )
  4u
  DELTA3 pl12:f2
  go=2 ph31 cpd2:f2
  30m do:f2 mc #0 to 2 F0(zd)
exit


ph1=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph2=0 2 
ph3=1 1 3 3
ph4=0 2 
ph5=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph6=0 2 0 2 1 3 1 3
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp5: f1 channel - shaped pulse (180degree)
;spnam5: Crp60comp.4
;sp26: f2 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p13: f1 channel - 180 degree shaped pulse
;     = 2msec for Crp60comp.4
;p36: f2 channel - 180 degree shaped pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                      [20 usec]
;cnst2: = J(XH)
;cnst11: 6  XH, XH2, XH3 positive
;        4  XH only
;        3  XH, XH3 positive, XH2 negative
;cnst13: = J(CH) long range
;cnst17: = -0.5 for Crp60comp.4
;cnst22: chemical shift for selective pulse (offset, in ppm)
;ns: 4 * n, total number of scans: NS * TD0
;ds: 16
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id: $
