;seljresqfsp
;avance-version (21/09/15)
;selective heteronuclear J-resolved correlation
;   for longrange couplings
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"d11=30m"
"d12=20u"


"in0=inf1/2"

"d0=3u"


#   ifdef CALC_SPOFFS
"spoffs3=bf2*(cnst22/1000000)-o2"
#   else
#   endif /*CALC_SPOFFS*/


1 ze
  d11 pl12:f2 
  d11 cpd2:f2
2 d1 
3 d12 do:f2
  d12 pl2:f2
  p1 ph1
  d0
  4u
  (center (p12:sp2 ph2) (p14:sp3 ph3):f2 )
  4u
  d0 
  d12 pl12:f2 
  go=2 ph31 cpd2:f2
  d1 mc #0 to 2 F1QF(caldel(d0, +in0))
  d12 do:f2
exit


ph1=0 2
ph2=0 0 1 1
ph3=0 0 0 0 2 2 2 2
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp2: f1 channel - shaped pulse (180degree)
;spnam2: Crp60comp.4
;sp3: f2 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse
;     = 2msec for Crp60comp.4
;p14: f2 channel - 180 degree shaped pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;cnst22: chemical shift for selective pulse (offset, in ppm)
;inf1: 1/w, w = max. width of multiplet
;in0: 1/(2 * w), w = max. width of multiplet
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id: $
