;seqtrcbcanhgp3d
;avance-version (21/09/15)
;seq. TROSY-CBCANH
;3D sequence with
;   inverse correlation for triple resonance using 
;      TROSY and inept transfer steps 
;
;      F1(H) -> F2(Caliph.,t1 -> Ca) -> F3(N,t2) -> F1(H,t3)
;
;on/off resonance Ca and C=O pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho (t2)
;using constant time in t1
;using constant time in t2
;(use parameterset SEQTRCBCANHGP3D)
;
;(A. Meissner & O.W. Sorensen, J. Magn. Reson. 151,
;   J. Biomol. NMR 20, 188-180 (2001))
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include<Avance.incl>
#include<Grad.incl>
#include<Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d3=1.1m-larger(p14,p22)"
"d4=1.7m"
"d21=12.4m"
"d22=3.6m"
"d24=4.5m"
"d26=2.3m"
"d27=11.0m"


"d0=3u"
"d10=3u"
"d20=d22/2+d0-p14/2-2u"
"d30=d21-p11-8u-p1"

"in0=inf1/4"
"in10=inf2/2"

"in20=in0"
"in30=in10"

"td1=tdmax(td1,d20*2,in20)"
"td2=tdmax(td2,d30*2,in30)"


"DELTA1=d22-d3-larger(p14,p22)-p2"
"DELTA2=d21-d10-p14-p21*4/3.1416-4u"
"DELTA3=d26-p16-d16"
"DELTA4=d26-p11-p16-d16-8u"
"DELTA5=d27-d24-p14-4u"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*(cnst21/1000000)-o2"
"spoffs8=0"


"l0=1"


aqseq 321


1 ze
2 d11
3 d11
  d1
  50u UNBLKGRAD
  d12 pl1:f1 pl3:f3

  (p1 ph1):f1
  d4
  (center (p2 ph2):f1 (p14:sp3 ph1):f2 )
  d4
  (p1 ph2):f1

  (p13:sp2 ph3):f2
  d0
  d0
  (center (p14:sp5 ph1):f2 (p22 ph1):f3 )
  d3
  (p2 ph2)
  DELTA1 pl19:f1
  (p14:sp3 ph1):f2
  d20
  d20
  (p14:sp5 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u cpds1:f1 ph2
  (p14:sp5 ph1):f2
  d24
  DELTA5
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  DELTA5
  (p14:sp5 ph1):f2
  d24
  4u
  (p13:sp2 ph2):f2

  4u do:f1
  (p26 ph8):f1
  p16:gp1
  d16

  if "l0 %2 == 1"
     {
     (p21 ph4):f3
     }
  else
     {
     (p21 ph5):f3
     }

  d10
  DELTA2
  (p14:sp5 ph1):f2
  4u
  (center (p14:sp3 ph1):f2 (p22 ph6):f3 )
  d30
  (p11:sp1 ph1:r):f1
  4u
  4u pl1:f1

  (p1 ph7)
  p16:gp2
  d16
  DELTA3
  (center (p2 ph1) (p22 ph1):f3 )
  DELTA3
  p16:gp2
  d16
  (center (p1 ph1) (p21 ph7):f3 )
  p16:gp3
  d16
  DELTA4
  (p11:sp1 ph8:r):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph8:r):f1
  DELTA4
  p16:gp3
  d16 pl1:f1
  4u BLKGRAD
  (p21 ph1):f3
  go=2 ph31
  d11 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0) & caldel(d20, -in20)) 
     F2EA(calph(ph7, +180) & calclc(l0, 1), caldel(d10, +in10) & caldel(d30, -in30) & calph(ph4, +180) & calph(ph5, +180) & calph(ph31, +180))
exit


ph1=0
ph2=1
ph3=0 0 0 0 2 2 2 2
ph4=2 0 1 3
ph5=2 0 3 1
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph7=3
ph8=2
ph31=1 3 2 0 3 1 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl19: f1 channel - power level for CPD/BB decoupling
;sp1 : f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : tau b : 1.1m-p14
;d4 : 1/(4J(CH)) - tau a                               [1.7 msec]
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (F1 in 3D) = d22+d0-p14-4u
;d21: 1/(4J(NCa)), T(N)                                [12.4 msec]
;d22: 1/(8J(CaCb)), T(C)                               [3.6 msec]
;d24  1/(4J(CaCO))                                     [4.5 msec]
;d26: 1/(4J(NH))                                       [2.3 msec]
;d27: 1/(4J'(NCa))                                     [11.0 msec]
;d30: decremented delay (F2 in 3D) = d21-p11-8u-p1
;cnst21: CO chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;o2p: Caliphatic chemical shift (cnst23)
;inf1: 1/SW(Cali) = 2 * DW(Cali)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(4 * SW(Cali)) = (1/2) DW(Cali)
;nd0: 4
;in10: 1/(2 * SW(N)) = DW(N)
;nd10: 2
;in20: = in0
;in30: = in10
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1       td1 max = 2 * d20 / in20
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:    	gp 1 : gp 2 : gp 3
;				  30 :   18 :   44

;for z-only gradients:
;gpz1: 30%
;gpz2: 18%
;gpz3: 44%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;$Id: $
