;sf_mehmqcgpph
;avance-version (22/04/28)
;SOFAST Methyl HMQC
;2D 1H/13C correlation via heteronuclear zero and double quantum
;   coherence
;using methyl selective 1H pulses
;cnst50 (~0.52) can be optimized for 0 first order phase in H-1 dimension (F2)
;phase sensitive
;with low power decoupling during acquisition
;
;C. Amero, P. Schanda, M. Asuncion Dura, I. Ayala, D. Marion, B. Franzetti,
;   B. Brutscher & J. Boisbouvier, J. Am. Chem. Soc. 131, 3448-9 (2009)
;
;(use parameterset SF_MEHMQCGPPH)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"d11=30m"
"d2=1s/(cnst2*2)"

"in0=inf1"

"d0=in0/2-p3*4/3.1416"


#   ifdef CALC_SP
"p50=(bwfac22/(cnst55*bf1))*1000000"
"spw22=plw1*pow((p1*cnst8)/(p50*90.0*integfac22),2)"
"spoal22=1"

"p42=(bwfac26/(cnst55*bf1))*1000000"
"spw26=plw1*pow((p1*totrot26)/(p42*90.0*integfac26),2)"
"spoal26=0.5"
#   endif /*CALC_SP*/


"DELTA1=d2-p19-d16-p50*cnst50"
"DELTA2=p50*cnst50-de-4u"


"spoffs22=bf1*(cnst49/1000000)-o1"
"spoffs26=bf1*(cnst49/1000000)-o1"


"acqt0=0"
baseopt_echo


1 ze 
  d11 pl14:f2
2 10m do:f2
  d1
  20u pl2:f2
  50u UNBLKGRAD

  p19:gp2
  d16

  (p50:sp22 ph1):f1
  p19:gp1
  d16
  (center (p42:sp26 ph2):f1 (DELTA1 p3 ph3 d0 p3 ph4 DELTA1):f2 )
  DELTA2
  p19:gp1
  d16 pl14:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2 
  10m do:f2 mc #0 to 2 
     F1PH(calph(ph3, +90), caldel(d0, +in0))
exit 
  

ph1=0 0 2 2
ph2=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph29=0
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl14: f2 channel - power level for CPD/BB decoupling (low power)
;sp22: f1 channel - shaped pulse 90 degree (Pc9_4_90.1000)
;sp24: f1 channel - shaped pulse 180 degree (Reburp.1000)
;       
;p1 : f1 channel - 90 degree pulse, used for calculation of selective pulses            
;p3 : f2 channel -  high power pulse
;p19: homospoil/gradient pulse                         [600 usec]
;p42: f1 channel - 180 degree shaped pulse for refocussing (Reburp.1000)                
;p50: f1 channel - shaped pulse for excitation   (Pc9_4_90.1000)
;                    
;p60: f2 channel - 90 degree pulse for decoupling sequence
;d0 : incremented delay (2D) = in0/2-p3*4/3.1415
;d1 : relaxation delay  [250-1000 msec]
;d2 : 1/(2J)CH
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery [200 usec]
;
;cnst2: = J(CH) (in Hz) [130]
;cnst8: flip angle in degree (PC9 pulse) [90-120]
;cnst49: Hmethyl chemical shift (offset, in ppm)  [~1]
;cnst50: compensation of chem. shift evolution during PC9 [~0.52]
;        optimize for 0 first order phase in F2
;cnst55: Hmethyl bandwidth (in ppm) [~4]
;
;inf1: 1/SW(Cme) = 2 * DW(Cme)
;in0: 1/ SW(Cme) = 2 * DW(Cme)
;nd0: 1
;ns: 2 * n
;ds: 16
;aq: <= 50 msec
;td1: number of experiments
;FnMODE: States-TPPI
;cpd2: decoupling according to sequence defined by cpdprg2: garp4.p61
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;cpdprg2: garp4.p61


;for z-only gradients:
;gpz1: 33%
;gpz2: 21%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.50



                                          ;preprocessor-flags-start
;CALC_SP: for calculation of bandselective Proton pulses based on cnst54 and cnst55
;             option -DCALC_SP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end

;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1

;$Id: $
