;stddiffgp19.3
;avance-version (20/01/09)
;pseudo 2D sequence
;   for saturation transfer difference
;with shaped pulse train for saturation on f2 channel
;alternating between on and off resonance
;   to be defined by fq2list
;with spoil sequence to destroy unwanted magnetization
;water suppression using 3-9-19 pulse sequence with gradients
;with spinlock to suppress protein signals
;(use parameterset STDDIFFGP19.3)
;
;M. Mayer & B. Meyer, Angew. Chem. Int. Ed. 38, 1784-1788 (1999)
;M. Mayer & B. Meyer, Angew. Chem. 111, 1902-1906 (1999)
;M. Piotto, V. Saudek & V. Sklenar, J. Biomol. NMR 2, 661 - 666 (1992)
;V. Sklenar, M. Piotto, R. Leppik & V. Saudek, J. Magn. Reson., 
;   Series A 102, 241 -245 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<frequency> stdlist=<$FQ2LIST>


"d11=30m"


"p29=d29"

"l5=d20/p42"
"d31=p42*l5"

"DELTA1=d1-d31"

"TAU=p1*2/3.1416-(p0-p27)*0.231-de+46u"


"acqt0=0"
baseopt_echo


1 ze
  3m stdlist:f2 st0
2 6m
3 6m
4 d11
  6m

5 50u UNBLKGRAD
  4u pl10:f1
  (p17 ph2)
  (p17*2 ph3)
  4u
  p30:gp1
  10m pl1:f1
  4u BLKGRAD

  DELTA1

6 (p42:sp9 ph4):f2
  4u
  lo to 6 times l5

  p1 ph1
  4u pl29:f1
  (p29 ph5)

  50u UNBLKGRAD
  p16:gp2
  d16 pl18:f1
  p27*0.231 ph6
  d19*2
  p27*0.692 ph6
  d19*2
  p27*1.462 ph6
  d19*2
  p27*1.462 ph7
  d19*2
  p27*0.692 ph7
  d19*2
  p0*0.231 ph7
  TAU
  p16:gp2
  d16
  4u BLKGRAD

  goscnp ph31

  3m stdlist.inc
  3m stdlist:f2 st
  lo to 3 times nbl
  3m ipp1 ipp5 ipp6 ipp7 ipp31
  3m stdlist.res
  lo to 4 times ns
  d11 wr #0 
  3m rppall
  3m zd
  lo to 5 times l4
exit


ph1=0 2
ph2=0
ph3=1
ph4=0
ph5=1 1 1 1 1 1 1 1 3 3 3 3 3 3 3 3
ph6=0 0 1 1 2 2 3 3
ph7=2 2 3 3 0 0 1 1
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)       [120 dB]
;pl10: f1 channel - power level for TOCSY-spinlock
;pl18: f1 channel - power level for 3-9-19-pulse (watergate)
;pl29: f1 channel - power level for trim pulse
;sp9 : f2 channel - shaped pulse  for saturation          [40 - 60 dB]
;p0 : f1 channel -  90 degree pulse at pl18
;                      use for fine adjustment
;p1 : f1 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;p17: f1 channel - trim pulse                             [2.5 msec]
;p27: f1 channel -  90 degree pulse at pl18
;p29: f1 channel - trim pulse
;p30: gradient pulse                                      [3 msec]
;p42: f2 channel -  shaped pulse for saturation           [50 msec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                                  [30 msec]
;d16: delay for homospoil/gradient recovery
;d19: delay for binomial water suppression
;     d19 = (1/(2*d)), d = distance of next null (in Hz)
;d20: saturation time
;d29: spinlock time                                       [10 - 50 msec]
;d31: saturation time as executed
;l4: l4 = number of averages = (total number of scans) / NS
;l5: loop for saturation: p42 * l5 = saturation time
;ns: 8 * n
;ds: 4
;td1: number of experiments
;NBL: NBL = number of irradiation frequencies

;define FQ2LIST (irradiation frequencies)
;               (list has to be stored in "/u/exp/stan/nmr/lists/f1")


;use gradient ratio:    gp 1 : gp 2
;                         40 :   30

;for z-only gradients:
;gpz1: 40%
;gpz2: 30%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


;this pulse program produces a ser-file (PARMOD = 2D)



;$Id:$
