;stdhsqcetgpsisp
;avance-version (20/03/03)
;STD-HSQC
;2D sequence
;   for saturation transfer difference
;   with H-1/C-13 correlation via double inept transfer
;   using sensitivity improvement
;with shaped pulse train for saturation on f3 channel
;alternating between on and off resonance
;   to be defined by fq3list
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;using shaped pulses for all 180degree pulses on f2 - channel
;(use parameterset STDHSQCETGPSISP)
;
;(M. Mayer & B. Meyer, Angew. Chem. Int. Ed. 38, 1784-1788 (1999))
;(M. Mayer & B. Meyer, Angew. Chem. 111, 1902-1906 (1999))
;(A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance, J. Magn.
;   Reson. 93, 151-170 (1991))
;(L.E. Kay, P. Keifer & T. Saarinen, J. Am. Chem. Soc. 114,
;   10663-5 (1992))
;J. Schleucher, M. Schwendinger, M. Sattler, P. Schmidt, O. Schedletzky,
;   S.J. Glaser, O.W. Sorensen & C. Griesinger, J. Biomol. NMR 4,
;   301-306 (1994))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<frequency> stdlist=<$FQ3LIST>


"p2=p1*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"

"l5=d20/p42"
"d31=p42*l5"


"d0=3u"

"in0=inf1/2"


"DELTA=p16+d16+p2+d0*2-4u"
"DELTA1=p16+d16+8u"
"DELTA2=d4-larger(p2,p14)/2-4u"
"DELTA3=d24-cnst17*p24/2-4u"
"DELTA4=d1-d31"


1 ze
  d11 pl12:f2
2 d11 do:f2 
3 d12 stdlist:f3
  d12 stdlist.inc

  DELTA4
4 (p42:sp9 ph5):f3
  4u
  lo to 4 times l5

  (p1 ph1)
  DELTA2 pl0:f2
  4u
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  4u
  DELTA2 pl2:f2 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) 

  (p3 ph3):f2
  d0 
  (p2 ph7)
  d0
  p16:gp1*EA
  d16 pl0:f2
  (p24:sp7 ph8:r):f2
  4u
  DELTA pl2:f2
  (center (p1 ph1) (p3 ph4):f2 )
  4u
  DELTA3 pl0:f2
  (center (p2 ph1) (p24:sp7 ph9:r):f2 )
  4u
  DELTA3 pl2:f2
  (center (p1 ph2) (p3 ph5):f2 )
  4u
  DELTA2 pl0:f2
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  DELTA2
  (p1 ph1)
  DELTA1
  (p2 ph1)
  4u
  p16:gp2
  d16 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d11 do:f2 mc #0 to 2 
     F1EA(calgrad(EA) & calph(ph5, +180), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 0 2 2
ph4=0 0 0 0 2 2 2 2
ph5=1 1 1 1 3 3 3 3
ph6=0
ph7=0 0 0 0 2 2 2 2
ph8=0 0 0 0 2 2 2 2
ph9=0
ph31=0 2 2 0 2 0 0 2
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)       [120 dB]
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse (180degree inversion)
;spnam3: Crp60,0.5,20.1
;sp7: f2 channel - shaped pulse (180degree refocussing)
;spnam7: Crp60comp.4
;sp9 : f3 channel - shaped pulse  for saturation          [40 - 60 dB]
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500usec for Crp60,0.5,20.1
;p16: homospoil/gradient pulse
;p24: f2 channel - 180 degree shaped pulse for refocussing
;     = 2msec for Crp60comp.4
;p28: f1 channel - trim pulse
;p42: f3 channel -  shaped pulse for saturation           [50 msec]
;d0 : incremented delay (2D)                              [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                                  [30 msec]
;d12: delay for power switching                           [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: saturation time
;d24: 1/(8J)XH for all multiplicities
;     1/(4J)XH for XH
;d31: saturation time as executed
;cnst2: = J(XH)
;cnst17: = -0.5 for Crp60comp.4
;l5: loop for saturation: p42 * l5 = saturation time
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence

;define FQ3LIST (irradiation frequencies)
;               (list has to be stored in "/u/exp/stan/nmr/lists/f1")


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;cnst17: Factor to compensate for coupling evolution during a pulse
;       (usually +1). A positive factor indicates that coupling
;       evolution continues during the pulse, whereas a negative
;       factor is necessary if the coupling is (partially) refocussed.



;$Id:$
