;stdnoesyesgpph.2
;avance-version (20/01/09)
;2D sequence
;   for saturation transfer difference
;   with homonuclear correlation via dipolar coupling 
;dipolar coupling may be due to noe or chemical exchange.
;with shaped pulse train for saturation on f2 channel
;alternating between on and off resonance
;   to be defined by fq2list
;phase sensitive
;with gradient pulses in mixing time
;with spinlock to suppress protein signals in F1 and F2
;water suppression using excitation sculpting with gradients
;
;(M. Mayer & B. Meyer, Angew. Chem. Int. Ed. 38, 1784-1788 (1999))
;(M. Mayer & B. Meyer, Angew. Chem. 111, 1902-1906 (1999))
;(J. Jeener, B.H. Meier, P. Bachmann & R.R. Ernst, J. Chem. Phys. 71,
;   4546-4553 (1979))
;(R. Wagner & S. Berger, J. Magn. Reson. 123 A, 119-121 (1996))
;(T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<frequency> stdlist=<$FQ2LIST>


"p2=p1*2"
"d11=30m"
"d12=20u"

"p29=d29"

"l5=d20/p42"
"d31=p42*l5"


"in0=inf1"

"d0=in0/2-p1*2/3.1416-4u"


"DELTA1=d1-d31"

"TAU=d8*0.5-p16-d16"
"TAU1=de+p1*2/3.1416+4u"


"acqt0=0"
baseopt_echo


1 ze
2 d11
3 d12 stdlist:f2
  d12 stdlist.inc

  50u UNBLKGRAD
  4u pl10:f1
  (p17 ph6)
  (p17*2 ph7)
  4u
  p30:gp1
  10m pl1:f1
  4u BLKGRAD

  DELTA1
4 (p42:sp9 ph5):f2
  4u
  lo to 4 times l5

  p1 ph1

  4u pl29:f1
  (p29 ph8)
  4u pl1:f1

  d0
  p1 ph2
  TAU UNBLKGRAD
  p16:gp2
  d16
  3u
  (p2 ph4):f1
  3u
  p16:gp2*-1
  d16
  TAU
  p1 ph3

  4u pl29:f1
  (p29 ph9)

  p16:gp3
  d16 pl0:f1
  (p40:sp10 ph10:r):f1
  4u
  d12 pl1:f1

  p2 ph11

  p16:gp3
  d16 
  TAU1
  p16:gp4
  d16 pl0:f1
  (p40:sp10 ph12:r):f1
  4u
  d12 pl1:f1

  p2 ph13

  p16:gp4
  d16
  4u BLKGRAD

  go=2 ph31
  d11 mc #0 to 2 F1PH(calph(ph1, +90) & calph(ph8, +90), caldel(d0, +in0))
exit


ph1=0 0 0 0 2 2 2 2 
ph2=0
ph3=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
    1 1 1 1 1 1 1 1 3 3 3 3 3 3 3 3
ph4=0
ph5=0
ph6=0
ph7=1
ph8=1 1 1 1 3 3 3 3
ph9=1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph10=0
ph11=2
ph12=2 2 3 3
ph13=0 0 1 1
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     1 3 3 1 3 1 1 3 3 1 1 3 1 3 3 1


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)       [120 dB]
;pl10: f1 channel - power level for TOCSY-spinlock
;pl29: f1 channel - power level for trim pulse
;sp9 : f2 channel - shaped pulse  for saturation          [40 - 60 dB]
;sp10: f1 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse                            [1 msec]
;p17: f1 channel - trim pulse                             [2.5 msec]
;p29: f1 channel - trim pulse
;p30: gradient pulse                                      [3 msec]
;p40: f1 channel - 180 degree shaped pulse (Squa100.1000)   [2 msec]
;p42: f2 channel -  shaped pulse for saturation           [50 msec]
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d11: delay for disk I/O                                  [30 msec]
;d12: delay for power switching                           [20 usec]
;d16: delay for homospoil/gradient recovery
;d20: saturation time
;d29: spinlock time                                       [10 - 50 msec]
;d31: saturation time as executed
;l5: loop for saturation: p42 * l5 = saturation time
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 16 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ

;define FQ2LIST (irradiation frequencies)
;               (list has to be stored in "/u/exp/stan/nmr/lists/f1")


;use gradient ratio:    gp 1 : gp 2 : gp 3 : gp 4
;                         40 :   40 :   31 :   11

;for z-only gradients:
;gpz1: 40%
;gpz2: 40%
;gpz3: 31%
;gpz4: 11%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id:$
