;stebpgpin1s
;avance-version (19/02/11)
;2D sequence for diffusion measurement using stimulated echo
; and INEPT for non-selective polarization transfer
;using bipolar gradient pulses for diffusion
;using 1 spoil gradient
;with decoupling during acquisition
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<gradient> diff=<Difframp>


"p2=p1*2"
"p4=p3*2"

"d3=1s/(cnst2*cnst11)"
"d4=1s/(cnst2*4)"


"DELTA=d4-p30-d16"
"DELTA1=d20-p3*2-p4-p30-d16*2-p19-d4"


1 ze
2 d1 do:f2
  50u pl2:f2 UNBLKGRAD
  (p3 ph1):f2
  p30:gp6*diff
  d16
  (p4 ph2):f2
  p30:gp6*-1*diff
  d16
  (p3 ph3):f2
  p19:gp7
  d16
  DELTA1
  (p3 ph4):f2
  DELTA 
  p30:gp6*diff
  d16
  (center (p4 ph5):f2 (p2 ph14) )
  p30:gp6*-1*diff
  d16
  DELTA BLKGRAD
  (p3 ph13):f2 (p1 ph15) 
  d3
  (center (p4 ph5):f2 (p2 ph16) )
  d3 pl12:f2
  go=2 ph31 cpd2:f2 
  d1 do:f2 mc #0 to 2 F1QF(calgrad(diff))
exit


ph1= 0
ph2= 0 2
ph3= 0 0 0 0 0 0 0 0  0 0 0 0 0 0 0 0  2 2 2 2 2 2 2 2  2 2 2 2 2 2 2 2
ph4= 0 0 0 0 0 0 0 0  2 2 2 2 2 2 2 2
ph5= 0 2
ph13=1 1 3 3
ph14=0 2 
ph15=0 0 0 0 1 1 1 1  2 2 2 2 3 3 3 3
ph16=0 2 0 2 1 3 1 3
ph31=0 0 2 2 1 1 3 3  0 0 2 2 1 1 3 3  2 2 0 0 3 3 1 1  2 2 0 0 3 3 1 1


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1  : f1 channel -  90 degree high power pulse
;p2  : f1 channel - 180 degree high power pulse
;p3  : f2 channel -  90 degree high power pulse
;p4  : f2 channel - 180 degree high power pulse
;p19 : gradient pulse 2 (spoil gradient)
;p30 : gradient pulse (little DELTA * 0.5)
;d1  : relaxation delay; 1-5 * T1
;d3  : 1/(6J(XH))  XH, XH2, XH3 positive
;      1/(4J(XH))  XH only
;      1/(3J(XH))  XH, XH3 positive, XH2 negative
;d4  : 1/(4J(XH))
;d11 : delay for disk I/O                             [30 msec]
;d16 : delay for gradient recovery
;d20 : diffusion time (big DELTA)
;cnst2: = J(XH)
;cnst11: 6  XH, XH2, XH3 positive
;        4  XH only
;        3  XH, XH3 positive, XH2 negative
;ns  : 8 * n
;ds  : 4 * m
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;td1 : number of experiments
;FnMODE: QF(no-frequency)
;        use xf2 and DOSY processing


;use gradient ratio:    gp 6 : gp 7
;                       100  : -17.13

;for z-only gradients:
;gpz6: 100%
;gpz7: -17.13% (spoil)

;use gradient files:   
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100

;use AU-program dosy to calculate gradient-file Difframp



;$Id:$
