;stegp1s
;avance-version (19/02/11)
;2D sequence for diffusion measurement using stimulated echo
;using 1 spoil gradient
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<gradient> diff=<Difframp>


"DELTA1=d20-p1*2-p30-d16-p19-d16"


1 ze
2 d1
3 50u UNBLKGRAD
  p1 ph1
  p30:gp6*diff
  d16
  p1 ph2
  p19:gp7
  d16
  DELTA1
  p1 ph3
  p30:gp6*diff
  d16
  4u BLKGRAD
  go=2 ph31 
  d1 mc #0 to 2 F1QF(calgrad(diff))
exit


ph1= 0 0 0 0 2 2 2 2  1 1 1 1 3 3 3 3
ph2= 1 3 0 2
ph3= 1 3 0 2
ph31=0 0 2 2 2 2 0 0  3 3 1 1 1 1 3 3 


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  high power pulse
;p19: gradient pulse 2 (spoil gradient)
;p30: gradient pulse (little DELTA)
;d1 : relaxation delay; 1-5 * T1
;d16: delay for gradient recovery
;d20: diffusion time (big DELTA)
;ns: 8 * n
;ds: 4 * m
;td1: number of experiments
;FnMODE: QF(no-frequency)
;        use xf2 and DOSY processing


;use gradient ratio:    gp 6 : gp 7
;                       100  : -17.13

;for z-only gradients:
;gpz6: 100%
;gpz7: -17.13% (spoil)

;use gradient files:   
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100

;use AU-program dosy to calculate gradient-file Difframp



;$Id:$
