;stegp1s1d
;avance-version (12/01/11)
;1D sequence for diffusion measurement using stimulated echo
;using 1 spoil gradient
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"DELTA1=d20-p1*2-p30-d16-p19-d16"


1 ze
2 30m
  d1
  50u UNBLKGRAD
  p1 ph1
  p30:gp6
  d16
  p1 ph2
  p19:gp7
  d16
  DELTA1
  p1 ph3
  p30:gp6
  d16
  4u BLKGRAD
  go=2 ph31 
  30m mc #0 to 2 F0(zd)
exit


ph1= 0 0 0 0 2 2 2 2  1 1 1 1 3 3 3 3
ph2= 1 3 0 2
ph3= 1 3 0 2
ph31=0 0 2 2 2 2 0 0  3 3 1 1 1 1 3 3 


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  high power pulse
;p19: gradient pulse 2 (spoil gradient)
;p30: gradient pulse (little DELTA)
;d1 : relaxation delay; 1-5 * T1
;d16: delay for gradient recovery
;d20: diffusion time (big DELTA)
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4 * m


;use gradient ratio:    gp 6 : gp 7
;                       var  : -17.13

;for z-only gradients:
;gpz6: 1-100%
;gpz7: -17.13% (spoil)

;use gradient files:   
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100

;use AU-program dosy to calculate gradient-file Difframp



;$Id:$
