;stmasdqfe
;
;TS3 / 08.09.2011
;
;checked by sewe 08.09.2011
;
; pulse sequence for (satellite transition) STMAS spectroscopy
; on half integer nuclei
; with coherence transfer pathway 0 -> +1/-1 -> +2/-2 -> 0 -> -1
; uses double quantum filter for CT/CT signal suppression and z-filter
; see H.-T. Kwak and Z. Gan; J. Magn. Reson. 164 (2003) 369-372
;
; written by Stefan Steuernagel (031201)
;
; for split-t1 experiments d6 or d7 must be incremented in relation to d0
; value depends on spin I and transition m
; For spin I=3/2 in6=in0*8/9
; For spin I=5/2 in7=in0*7/24(m=3)
;                 in6=in0*11/6(m=5)
; For spin I=7/2 in7=in0*28/45(m=3)
;                 in6=in0*23/45(m=5), in6=in0*108/45(m=7)
; For spin I=9/2 in7=in0*55/72(m=3), in7=in0*1/18(m=5)
;                in6=in0*9/8(m=7), in6=in0*25/9(m=9)
;
;

;parameters:
;pl1 : =0W, not used
;pl11 : power for hard pulses
;pl21 : power for selective pulse
;p1 : excitation pulse
;p2 : mixing pulse
;p4 : selective 180 degree pulse
;ns : 16 * n
;d1 : recycle delay
;d6 : to match length of FID
;d7 : =0
;in6 : =in0*8/9 for I=3/2, else =0
;in7 : =in0*7/24 for I=5/2, =in0*28/45 for I=7/2, =0 for I=3/2
;cnst31 : spinning frequency
;l0 : = number of rotor periods for 1. increment
;in0 : =1/spinning frequency for rotor synchronisation,
;	or half of it for half rotor synchronisation
;FnMODE: QF
;no shearing transformation required
;
;
;$CLASS=Solids
;$DIM=2D
;$TYPE=half integer quadrupoles
;$SUBTYPE=STMAS
;$COMMENT=shifted echo split-t1 DQF STMAS

prosol relations=<solids_stmas>


"d0=(1s*l0/cnst31)-p1/2-p4-p2/2"
"acqt0=0" ; baseopt
"inf1=in0"

1 ze
2 d1
  (p1 pl11 ph1):f1
  d0
  (p4 pl21 ph2):f1
  (p2 pl11 ph3):f1
  d6
  (p4 pl21 ph4):f1
  d7
  go=2 ph31
  d1 mc #0 to 2 F1QF(id0&id6&id7) 
exit

ph1= 0 2 1 3  
ph2= 0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph3= {0}*16 {1}*16 {2}*16 {3}*16
ph4= 0 
ph31=ph3-ph1-ph2



;$Id:$
