;t1irig
;avance-version (20/01/09)
;T1 measurement using inversion recovery
;with inverse gated decoupling
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


define list<delay> vd_list=<$VDLIST>


"p2=p1*2"
"d11=30m"


"acqt0=-p1*2/3.1416"


1 ze
  4u pl12:f2
2 d11 do:f2
  d1
  p2 ph1
  vd_list
  p1 ph2
  go=2 ph31 cpd2:f2
  d11 do:f2 wr #0 if #0 vd_list.inc
  lo to 1 times td1
exit


ph1=0 2 
ph2=0 0 2 2 1 1 3 3
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;vd : variable delay, taken from vd-list
;ns: 8 * n
;ds: 4
;td1: number of experiments = number of delays in vd-list
;FnMODE: undefined
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence

;define VDLIST

;this pulse program produces a ser-file (PARMOD = 2D)



;$Id:$
