;trhcccgcbcaconhetgp3d
;avance-version (21/09/15)
;TROSY-Har(CC-TOCSYCgCbCaCO)NH
;3D sequence with
;   inverse correlation for triple resonance using 
;      TROSY and inept transfer steps
;
;      F1(Haro,t1) -> F2(Caro,-> Cg ->Cb -> Ca)-> 
;                  -> F2(C=O)  > F3(N,t2) -> F1(H,t3)
;
;on/off resonance Carbon pulses using shaped pulse
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho (t2)
;using constant time in t2
;uncompensated version d28=d26
;(use parameterset TRHCCCGCBCACONHETGP3D)
;
;F. Loehr, R. Haensel, V.V. Rogov & V. Doetsch, 
;   J. Biomol. NMR 37, 205-224 (2007)
;(T. Yamazaki, J.D. Forman-Kay & L.E. Kay, 
;   J. Am. Chem. Soc. 115, 11054-11055 (1993))
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


define list<gradient> EA1 = { 0.8750 1.0000}
define list<gradient> EA2 = { 1.0000 0.6667}
define list<gradient> EA3 = { 0.6595 1.0000}


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"

"d22=4.6m"
"d23=12.4m"
"d24=17.4m"
"d25=10.4m"
"d26=2.3m"
"d27=11.0m"
"d28=2.3m"


"p19=500u"


"d0=3u"
"d10=3u"
"d30=d23/2-d28/2-p14/2-p16/2-d16/2-2u"

"in0=inf1/2"
"in10=inf2/4"

"in30=in10"

"td2=tdmax(td2,d30*2,in30)"


"DELTA=d0*2+p14+4u"
"DELTA1=d25/2-p19-d16"
"DELTA2=d24/2-p14-d25/2"
"DELTA3=d24/2-p14-p19-d16-4u"
"DELTA4=d25/4"
"DELTA5=d27-d22+4u"
"DELTA6=d23/2-d28/2-p14/2-d10+p21*2/3.1416"
"DELTA7=d23/2-d28/2-p14/2-d10-p16-d16-p11+p21*2/3.1416-8u"
"DELTA8=d28-p16-d16"
"DELTA9=d26-p11-p16-d16-8u"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst30)/1000000)"
"spoffs7=bf2*((cnst22-cnst21)/1000000)"
"spoffs8=0"
"spoffs13=bf2*((cnst24-cnst30)/2000000)"
"spoffs20=bf2*((cnst30-cnst24)/1000000)"


aqseq 321


1 d11 ze
  d12 fq=cnst18(bf ppm):f1

2 d11
3 d12 pl32:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1 pl3:f3
  d12 fq=cnst24(bf ppm):f2
  d12 fq=cnst28(bf ppm):f1
  50u UNBLKGRAD
  (p3 ph1):f2
  p19:gp4
  d16

  (p1 ph3)
  DELTA
  (p2 ph4)
  d0
  (p14:sp3 ph1):f2
  d0

  4u pl21:f1 pl22:f2
					;begin DIPSI2:f1, DIPSI2:f2
4 (p46*3.556 ph23):f1 (p46*3.556 ph23):f2
  (p46*4.556 ph25):f1 (p46*4.556 ph25):f2
  (p46*3.222 ph23):f1 (p46*3.222 ph23):f2
  (p46*3.167 ph25):f1 (p46*3.167 ph25):f2
  (p46*0.333 ph23):f1 (p46*0.333 ph23):f2
  (p46*2.722 ph25):f1 (p46*2.722 ph25):f2
  (p46*4.167 ph23):f1 (p46*4.167 ph23):f2
  (p46*2.944 ph25):f1 (p46*2.944 ph25):f2
  (p46*4.111 ph23):f1 (p46*4.111 ph23):f2
  
  (p46*3.556 ph25):f1 (p46*3.556 ph25):f2
  (p46*4.556 ph23):f1 (p46*4.556 ph23):f2
  (p46*3.222 ph25):f1 (p46*3.222 ph25):f2
  (p46*3.167 ph23):f1 (p46*3.167 ph23):f2
  (p46*0.333 ph25):f1 (p46*0.333 ph25):f2
  (p46*2.722 ph23):f1 (p46*2.722 ph23):f2
  (p46*4.167 ph25):f1 (p46*4.167 ph25):f2
  (p46*2.944 ph23):f1 (p46*2.944 ph23):f2
  (p46*4.111 ph25):f1 (p46*4.111 ph25):f2

  (p46*3.556 ph25):f1 (p46*3.556 ph25):f2
  (p46*4.556 ph23):f1 (p46*4.556 ph23):f2
  (p46*3.222 ph25):f1 (p46*3.222 ph25):f2
  (p46*3.167 ph23):f1 (p46*3.167 ph23):f2
  (p46*0.333 ph25):f1 (p46*0.333 ph25):f2
  (p46*2.722 ph23):f1 (p46*2.722 ph23):f2
  (p46*4.167 ph25):f1 (p46*4.167 ph25):f2
  (p46*2.944 ph23):f1 (p46*2.944 ph23):f2
  (p46*4.111 ph25):f1 (p46*4.111 ph25):f2

  (p46*3.556 ph23):f1 (p46*3.556 ph23):f2
  (p46*4.556 ph25):f1 (p46*4.556 ph25):f2
  (p46*3.222 ph23):f1 (p46*3.222 ph23):f2
  (p46*3.167 ph25):f1 (p46*3.167 ph25):f2
  (p46*0.333 ph23):f1 (p46*0.333 ph23):f2
  (p46*2.722 ph25):f1 (p46*2.722 ph25):f2
  (p46*4.167 ph23):f1 (p46*4.167 ph23):f2
  (p46*2.944 ph25):f1 (p46*2.944 ph25):f2
  (p46*4.111 ph23):f1 (p46*4.111 ph23):f2
					;end DIPSI2:f1, DIPSI2:f2

  4u pl20:f2
						;begin DIPSI2:f2
5 (p45*3.556 ph23):f2
  (p45*4.556 ph25):f2
  (p45*3.222 ph23):f2
  (p45*3.167 ph25):f2
  (p45*0.333 ph23):f2
  (p45*2.722 ph25):f2
  (p45*4.167 ph23):f2
  (p45*2.944 ph25):f2
  (p45*4.111 ph23):f2
  
  (p45*3.556 ph25):f2
  (p45*4.556 ph23):f2
  (p45*3.222 ph25):f2
  (p45*3.167 ph23):f2
  (p45*0.333 ph25):f2
  (p45*2.722 ph23):f2
  (p45*4.167 ph25):f2
  (p45*2.944 ph23):f2
  (p45*4.111 ph25):f2

  (p45*3.556 ph25):f2
  (p45*4.556 ph23):f2
  (p45*3.222 ph25):f2
  (p45*3.167 ph23):f2
  (p45*0.333 ph25):f2
  (p45*2.722 ph23):f2
  (p45*4.167 ph25):f2
  (p45*2.944 ph23):f2
  (p45*4.111 ph25):f2

  (p45*3.556 ph23):f2
  (p45*4.556 ph25):f2
  (p45*3.222 ph23):f2
  (p45*3.167 ph25):f2
  (p45*0.333 ph23):f2
  (p45*2.722 ph25):f2
  (p45*4.167 ph23):f2
  (p45*2.944 ph25):f2
  (p45*4.111 ph23):f2
						;end DIPSI2:f2

  p19:gp5
  d16
  DELTA1
  (p14:sp20 ph1):f2
  DELTA2
  (p14:sp3 ph5):f2
  DELTA3
  p19:gp5
  d16
  (p14:sp20 ph1):f2
  4u
  (p13:sp8 ph6):f2 

  p19:gp6
  d16 fq=cnst30(bf ppm):f2
  d12 fq=cnst18(bf ppm):f1
  d12 pl19:f1
  20u cpds1:f1 ph2

  (p13:sp2 ph7):f2
  DELTA4
  (p8:sp13 ph1):f2
  DELTA4
  DELTA4
  (p8:sp13 ph1):f2
  DELTA4
  (p13:sp8 ph8):f2

  4u
  (p14:sp5 ph1):f2
  d22
  (p14:sp3 ph9):f2
  4u
  (p14:sp5 ph1):f2
  d22
  (p13:sp2 ph1):f2

  4u do:f1
  p16:gp7
  d16 fq=cnst21(bf ppm):f2
  (p26 ph2):f1
  20u cpds1:f1 ph1

  (p13:sp2 ph10):f2
  d22
  (p14:sp7 ph1):f2
  DELTA5
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d27
  (p14:sp7 ph1):f2
  4u
  (p13:sp8 ph1):f2

  4u do:f1
  (p26 ph11):f1

  (p21 ph12):f3
  d30
  (p14:sp7 ph1):f2
  d30
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  DELTA6
  d10
  (p14:sp7 ph1):f2
  d10
  DELTA7
  p16:gp1*EA1
  d16 pl0:f1
  (p11:sp1 ph13:r):f1
  4u
  4u pl1:f1

  (p1 ph14)
  p16:gp8
  d16
  DELTA8
  (center (p2 ph2) (p14:sp3 ph1):f2 (p22 ph2):f3 )
  DELTA8
  p16:gp8
  d16
  (p1 ph1) 

  p16:gp2*EA2
  d16

  (p21 ph1):f3
  p16:gp9
  d16
  DELTA9 pl0:f1
  (p11:sp1 ph15:r):f1
  4u
  4u pl1:f1
  (center (p2 ph2) (p22 ph2):f3 )
  4u pl0:f1
  (p11:sp1 ph15:r):f1
  4u
  DELTA9
  p16:gp9
  d16 pl1:f1
  (p21 ph16:r):f3

  p16:gp3*EA3
  d16
  4u BLKGRAD

  go=2 ph31
  d11 mc #0 to 2 
     F1PH(calph(ph3, +90) & calph(ph4, +90), caldel(d0, +in0))
     F2EA(calgrad(EA1) & calgrad(EA2) & calgrad(EA3) & calph(ph14, +180) & calph(ph16, +180), caldel(d10, +in10) & caldel(d30, -in30) & calph(ph12, +180) & calph(ph31, +180))
exit


ph1=0
ph2=1
ph3=1 1 1 1 1 1 1 1 3 3 3 3 3 3 3 3
ph4=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph5=0
ph6=0 0 2 2
ph7=0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2 2 2 2 2 2 2 2 2
ph8=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph9=0
ph10=0 0 0 0 2 2 2 2
ph11=3
ph12=0 2
ph13=2
ph14=3
ph15=3
ph16=3
ph23=0
ph25=2
ph29=0
ph31=0 2 2 0 2 0 0 2 2 0 0 2 0 2 2 0
     2 0 0 2 0 2 2 0 0 2 2 0 2 0 0 2


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl19: f1 channel - power level for CPD/BB decoupling
;pl20: f2 channel - power level for (hetero) TOCSY-spinlock (high sel.)
;pl21: f1 channel - power level for hetero TOCSY-spinlock (med. sel.)
;pl22: f2 channel - power level for hetero TOCSY-spinlock (med. sel.)
;         to match p46/pl21
;pl32: f1 channel - power level for low power presaturation
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                  for time reversed pulse
;sp13: f2 channel - shaped pulse 180 degree  (adiabatic)
;sp20: f2 channel - shaped pulse 180 degree  (Cbeta(aro) off resonance, p14)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p19: gradient pulse 2                                 [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p26: f1 channel -  90 degree pulse at pl19
;p45: f2 channel -  90 degree pulse at pl20 (TOCSY, high sel.)
;p46: f1 channel -  90 degree pulse at pl21 (hetero TOCSY, med. sel.)
;     f2 channel -  90 degree pulse at pl22 (hetero TOCSY, med. sel.)
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d22: 1/(4J(CaCO))                                     [4.6 msec]
;d23: 1/(4J(NCO)                                       [12.4 msec]
;d24: 1/(J(CgCd))                                      [17.4 msec]
;d25: 1/(2J(CbCg))                                     [10.4 msec]
;d26: 1/(4J'(NH)                                       [2.3 msec]
;d27: 1/(4J'(NCO)                                      [11.0 msec]
;d28: 1/(4J'(NH)                                       [2.3 msec]
;d30: decremented delay (F2 in 3D) = d23/2-d28/2-p14/2-p16/2-d16/2-2u
;cnst18: H2O chemical shift (offset, in ppm)
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst24: Caromatic chemical shift (offset, in ppm)     [130 ppm]
;cnst28: Haromatic chemical shift (offset, in ppm)     [7.2 ppm]
;cnst30: Cbeta(aro) chemical shift (offset, in ppm)    [35 ppm]
;inf1: 1/SW(Haro) = 2 * DW(Haro)
;inf2: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(Haro)) =  DW(Haro)
;nd0: 2
;in10: 1/(4 * SW(N)) = (1/2) DW(N)
;nd10: 4
;in30: = in10
;ns: 16 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2       td2 max = 2 * d30 / in30
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpds1: decoupling according to sequence defined by cpdprg1
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence



;for z-only gradients
;gpz1: -80%
;gpz2: 30%
;gpz3: 30.13%
;gpz4: 11%
;gpz5: 17%
;gpz6: 19%
;gpz7: 31%
;gpz8: 5%
;gpz9: 45%


;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam8: SMSQ10.100
;gpnam9: SMSQ10.100


;set pl32 to 0W when presaturation is not required
;   use pl1 + 75 to 80dB to reduce radiation damping



;$Id: $
