;trnoef3gpsi3d
;avance-version (19/02/11)
;2D H-1/X correlation via TROSY and inept transfer
;   using sensitivity improvement
;for measuring H1-N15 NOEs
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;using f3 - channel
;recording NONOE and NOE as pseudo 3D
;decoupling for length of aq (d31) to have same amount of heating as in hsqc
;(use parameterset )
;
;(G. Zhu, Y. Xia, L.K. Nicholson & K.H. Sze,
;   J. Magn. Reson. 143, 423-426 (2000))
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d26=1s/(cnst4*4)"

"p0=p1*4/3"

"d31=aq"


"d10=3u"

"in10=inf2/2"


"DELTA1=d26-p1-p11-p19-d16-4u"
"DELTA3=d26-p11-p19-d16-12u"
"DELTA4=d26-p11-p19-d16-p21-12u"

#   ifdef LABEL_CN
"DELTA=d10*2+p8-p21*4/3.1416"
"DELTA2=d26-p11-p19-d16-8u"
#   else
"DELTA2=d26+d10*2-p11-p19-d16-8u"
#   endif /*LABEL_CN*/


"l0=1"
"l4=d1/(p0+5m)"
"l11=1"


aqseq 312


1 ze
2 d11
3 d12 pl1:f1 pl16:f3
  d31 cpd3:f3
  4u do:f3

  if "l11 %2 == 0"
     {
     d1
     }
  else
     {
4    (p0 ph1)
     5m
     lo to 4 times l4
     4u
     }

  50u UNBLKGRAD

  p16:gp1
  d16

  (p1 ph1)
  4u
  p16:gp2
  d16 pl3:f3

  if "(l0) %2 == 1"
     {
     (p21 ph4):f3
     }
  else
     {
     (p21 ph5):f3
     }

#   ifdef LABEL_CN
  DELTA
  (p22 ph1):f3
  d10
  (p8:sp13 ph1):f2
  d10
#   else
  d10
  d10
#   endif /*LABEL_CN*/

  (p1 ph6)
  4u
  (p11:sp1 ph6):f1
  p19:gp3
  d16
  DELTA1 pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  DELTA2
  p19:gp3
  d16
  (p11:sp1 ph3:r):f1
  4u
  4u pl1:f1

  (center (p1 ph1) (p21 ph2):f3 )

  4u
  p19:gp4
  d16
  DELTA3
  (p11:sp1 ph3:r):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph3:r):f1
  DELTA4
  p19:gp4
  d16 pl1:f1
  4u
  4u BLKGRAD
  (p21 ph7):f3

  go=2 ph31
  d11 mc #0 to 2 
     F1QF(calclc(l11,1))
     F2EA(calclc(l0, 1) & calph(ph6, +180) & calph(ph7, +180), caldel(d10, +in10) & calph(ph4, +180) & calph(ph5, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=2
#   ifdef LABEL_CN
ph4=3 1 2 0
ph5=1 3 2 0
#   else
ph4=1 3 2 0
ph5=3 1 2 0
#   endif /*LABEL_CN*/
ph6=1
ph7=0
ph31=0 2 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree  (adiabatic)
;p0 : f1 channel - 120 degree high power pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse                       [1 msec]
;p19: gradient pulse 2                               [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D)                   [3 usec]
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d26: 1/(4J(YH))
;d31: = aq
;cnst4: = J(YH)
;l4: loop for saturation sequence: = d1 / (p0 + 5m)
;inf2: 1/SW(X) = 2 * DW(X)
;in10: 1/(2 * SW(X)) = DW(X)
;nd10: 2
;ns: 4 * n
;ds: >= 32
;td1: = 2
;td2: number of experiments in F2
;FnMODE: QF(no-frequency) in F1
;FnMODE: echo-antiecho in F2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 11%
;gpz2: 7%
;gpz3: 10%
;gpz4: 25%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.50
;gpnam4: SMSQ10.50


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
