;trosyetfpf3gpsi
;avance-version (12/01/11)
;2D H-1/X correlation via TROSY
;   using sensitivity improvement
;phase sensitive using Echo/Antiecho gradient selection
;using f3 - channel
;using flip-back pulse
;(use parameterset TROSYETF3GPSI)
;
;M. Czisch & R. Boelens, J. Magn. Reson. 134, 158-160 (1998)
;K. Pervushin, G. Wider & K. Wuethrich, J. Biomol. NMR 12,
;   345-348 (1998)
;A. Meissner, T. Schulte-Herbrueggen, J. Briand & O.W. Sorensen, Mol. Phys. 96,
;   1137-1142 (1998)
;J. Weigelt, J. Am. Chem. Soc. 120, 10778-10779 (1998)
;M. Rance, J.P. Loria & A.G. Palmer III, J. Magn. Reson. 136, 91-101 (1999)
;G. Zhu, X.M. Kong & K.H. Sze, J. Biomol. NMR 13, 77-81 (1999)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d26=1s/(cnst4*4)"


"d0=6u"

"in0=inf1/2"


"DELTA1=d26-p16-d16-4u"
"DELTA2=d26-p1-p11-p16-d16-4u"
"DELTA3=d26-p11-p16-d16-4u"
"DELTA4=p19+d16+8u"

#   ifdef LABEL_CN
"DELTA=d0*2+p8+p21*4/3.1416+8u"
#   else
"DELTA=d0*2+p21*4/3.1416+6u"
#   endif /*LABEL_CN*/


"l0=1"


1 ze 
2 d11
3 d1 pl1:f1
  50u UNBLKGRAD
  (p1 ph1)
  4u
  p16:gp1
  d16
  DELTA1
  (center (p2 ph2) (p22 ph1):f3 )
  4u
  DELTA1
  p16:gp1
  d16
  (p1 ph3) 

  (p11:sp1 ph9:r):f1
  2u
  2u pl1:f1

  if "l0 %2 == 1"
     {
     (p21 ph4):f3
     }
  else
     {
     (p21 ph5):f3
     }

#   ifdef LABEL_CN
  d0 gron0
  2u groff
  (p8:sp13 ph1):f2
  d0 gron0*-1
  2u groff
#   else
  d0 gron0
  d0 gron0*-1
  2u groff
#   endif /*LABEL_CN*/

  4u
  p19:gp2*EA
  d16
  (p22 ph1):f3

  DELTA

  p19:gp2*-1*EA
  d16

  (p1 ph6)
  (p11:sp1 ph8:r):f1
  4u
  p16:gp3
  d16
  DELTA2 pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  DELTA3
  p16:gp3
  d16
  (p11:sp1 ph1:r):f1
  2u
  2u pl1:f1
  (center (p1 ph1) (p21 ph2):f3 )

  4u
  p16:gp4
  d16
  DELTA1
  (center (p2 ph1) (p22 ph1):f3 )
  DELTA1
  p16:gp4
  d16
  4u
  (p21 ph7):f3

  DELTA4
  (p2 ph1)
  4u
  p19:gp5
  d16
  4u BLKGRAD

  go=2 ph31
  d11 mc #0 to 2 
     F1EA(calgrad(EA) & calph(ph6, +180) & calph(ph7, +180) & calph(ph8, +180) & calclc(l0, 1), caldel(d0, +in0) & calph(ph4, +180) & calph(ph5, +180) & calph(ph31, +180))
exit 
  

ph1=0
ph2=1
ph3=3
ph4=1 3 2 0
ph5=3 1 2 0
ph6=1
ph7=0
ph8=3
ph9=2
ph31=0 2 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p16: homospoil/gradient pulse                         [1 msec]
;p19: gradient pulse 2                                 [500 usec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                           [6 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d26 : 1/(4J)NH
;cnst4: = J(NH)
;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/(2 * SW(N)) = DW(N)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: echo-antiecho


;for z-only gradients:
;gpz0: 3%
;gpz1: 30%
;gpz2: 80%
;gpz3: 45%
;gpz4: 50%
;gpz5: 16.2%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.50
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.50


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id:$
