;trosyf3gpiaidphwg
;avance-version (21/09/15)
;IDIS-TROSY - IPAP 
;2D H-1/N-15 correlation via TROSY
;   with isotopical discrimination between 15N{12CO} and 15N{13CO}
;phase sensitive (t1)
;using semi-constant time in t1
;water suppression using watergate sequence
;(use parameterset )
;
;W. Bermel, E.N. Tkach, A.G. Sobol & A.P. Golovanov, 
;   J. Am. Chem. Soc. 131, 8564-8570 (2009)
;(A.P. Golovanov, R.T. Blankley, J.M. Avis & W. Bermel,
;   J. Am. Chem. Soc. 129, 6528-6535 (2007))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"


"d23=16.4m"
"d26=2.3m"


"d28=3u"
"d0=d23-p14-d28"
"d20=d23-larger(p8,p14)/2"
"d29=d23-p14-d28-p11-p1-8u"

"in0=inf1/4"

"FACTOR1=d20*10000000*2/td1"
"INCR1=FACTOR1/10000000"

"if ( INCR1 > in0 ) { in20 = in0; } else { in20 = INCR1; }"
"if ( INCR1 > in0 ) { in28 = 0; } else { in28=in0-INCR1; }"

"in29=in0"


"DELTA1=d26-p11-p16-d16-8u"
"DELTA2=d26-p16-d16"


"TAU=p14"
"TAU2=larger(p8,p14)/2-p14/2"


"spoffs3=0"
"spoffs5=bf2*(cnst22/1000000)-o2"
"spoffs13=bf2*(cnst26/1000000)-o2"


"l0=0"
"l10=0"


1 d11 ze
2 d11
3 d1 pl1:f1
  50u UNBLKGRAD

  p1 ph1
  4u pl0:f1
  (p11:sp1 ph3:r):f1
  4u
  p16:gp1
  d16 pl1:f1
  DELTA1
  (center (p2 ph2) (p22 ph1):f3 )
  DELTA1
  p16:gp1
  d16 pl0:f1
  (p11:sp1 ph4:r):f1
  4u
  4u pl1:f1
  (p1 ph4):f1 

  if "l0 %2 == 1"
     {
     (p21 ph5):f3
     }
  else
     {
     (p21 ph6):f3
     }

  d0

  if "l10 %2 == 1"
     {
     (p14:sp3 ph1):f2
     }
  else
     {
     TAU
     }

  d28
  (p22 ph1):f3
  d20

  if "l10 %2 == 1"
     {
     TAU2
     (p14:sp5 ph1):f2
     TAU2
     }
  else
     {
     (p8:sp13 ph1):f2
     }

  d20
  (p22 ph1):f3
  d28

  if "l10 %2 == 1"
     {
     (p14:sp3 ph1):f2
     }
  else
     {
     TAU
     }

  d29 pl0:f1
  (p11:sp1 ph1:r):f1
  4u
  4u pl1:f1
  (p1 ph7)

  p16:gp2
  d16
  DELTA2
  (center (p2 ph1) (p22 ph1):f3 )
  DELTA2
  p16:gp2
  d16
  (center (p1 ph1) (p21 ph8):f3 )
  p16:gp3
  d16
  DELTA1 pl0:f1
  (p11:sp1 ph3:r):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u pl0:f1
  (p11:sp1 ph3:r):f1
  DELTA1
  p16:gp3
  d16 pl1:f1
  4u BLKGRAD
  (p21 ph1):f3
  go=2 ph31
  d11 mc #0 to 2 

#if   defined(LABEL_N)
     F0(iu10 & zd)
     F1I(ip8*2, 2)
#endif /*LABEL_N*/
#if   defined(LABEL_NC)
     F0(iu10 & ip31*2 & zd)
     F1I(ip8*2, 2)
#endif /*LABEL_NC*/
#if   !defined(LABEL_N) && !defined(LABEL_NC)
     F1I(iu10, 2, ip8*2, 2)
#endif /*LABEL_N, LABEL_NC*/

     F1EA(calph(ph7, +180) & calph(ph8, +180) & calclc(l0, 1), caldel(d0, +in0) & caldel(d20, -in20) & caldel(d28, +in28) & caldel(d29, +in29))
exit


ph1=0
ph2=1 
ph3=2
ph4=3
ph5=1 3 2 0
ph6=1 3 0 2
ph7=1
ph8=1
ph31=1 3 2 0


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (C=O on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp13: f2 channel - shaped pulse 180 degree  (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse             [1 msec]
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0: incremented delay (2D) = d23-p14-d28
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d20: decremented delay (2D) = d23-larger(p8,p14)/2
;d23: 1/(4J(NCO)                                       [16.4 msec]
;d26: 1/(4J'(NH)                                       [2.3 msec]
;d28: incremented delay (2D)                           [3 usec]
;d29: incremented delay (2D) = d23-p14-d28-p11-p1-8u
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst26: Call chemical shift (offset, in ppm)          [101 ppm]
;o2p: CO chemical shift (cnst21)
;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/(4 * SW(N)) = (1/2) DW(N)
;nd0: 4
;in20: = d20*8/td1 or in0 (without option)
;        d20*4/td1 or in0 (LABEL_N or LABEL_NC)
;in28: = in0 - in20
;in29: = in0
;ns: 4 * n
;ds: 32
;td0: 1 (without option) or
;     2 (LABEL_N or LABEL_NC)
;td1: number of experiments in F1
;FnMODE: echo-antiecho in F1


;for z-only gradients:
;gpz1: 30%
;gpz2: 18%
;gpz3: 44%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100



;options:
;   without option two interleaved datasets are recorded, which
;      have to be split into one for 15N{12CO} and another for
;      15N{13CO}
;   the options LABEL_N or LABEL_NC will create a single 2D
;      for either 15N{12CO} or 15N{13CO}

                                          ;preprocessor-flags-start
;LABEL_N:   selects 15N{12CO} (eda: ZGOPTNS: -DLABEL_N)
;LABEL_NC:  selects 15N{13CO} (eda: ZGOPTNS: -DLABEL_NC)
                                          ;preprocessor-flags-end



;use AU-program split [ipap 2] to process data
;   (for interleaved dataset only) followed by a
;   split [2] of the two resulting datasets



;$Id: $
