;trosygpphpr
;avance-version (15/07/20)
;2D H-1/X correlation via TROSY
;phase sensitive
;with presaturation during relaxation delay
;
;K. Pervushin, R. Riek, G. Wider & K.Wuethrich, Proc. Natl. Acad.
;   Sci. USA, 12366-12371 (1997)
;M. Piotto, V. Saudek & V. Sklenar, J. Biomol. NMR 2, 661 - 666 (1992)
;V. Sklenar, M. Piotto, R. Leppik & V. Saudek, J. Magn. Reson.,
;   Series A 102, 241 -245 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"
"d13=4u"


"d0=3u"

"in0=inf1"


"DELTA1=d4-p16-d16"
"DELTA2=d4-p16-d16-p3-8u"
"DELTA3=d4-p16-larger(p2,p14)/2-4u"
"DELTA4=d4-p16-larger(p2,p4)/2-p1-4u"
"DELTA5=d4-p16-larger(p2,p4)/2-4u"


1 ze 
2 d11
3 d12 pl9:f1
  d1 cw:f1 ph29
  d13 do:f1
  d12 pl1:f1
  50u UNBLKGRAD

  (p1 ph1)
  4u
  p16:gp1
  DELTA3
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  4u
  p16:gp1
  DELTA3 pl2:f2
  (p1 ph2) 

  4u
  p16:gp2
  d16

  (p3 ph3):f2
  d0
  (p1 ph5)
  4u
  p16:gp3
  DELTA4
  (center (p2 ph1) (p4 ph1):f2 )
  4u
  p16:gp3
  DELTA5
  (center (p1 ph1) (p3 ph4):f2 )
  DELTA1
  p16:gp4
  d16
  (center (p2 ph1) (p4 ph1):f2 )
  4u
  p16:gp4
  d16
  4u BLKGRAD
  DELTA2
  (p3 ph9):f2
  go=2 ph31
  d11 mc #0 to 2 F1PH(calph(ph3, +90) & calph(ph6, +90) & calph(ph29, +90), caldel(d0, +in0))
exit 
  

ph1=0
ph2=1
ph3=1 3 2 0
ph4=1
ph5=1 1 1 1 3 3 3 3
ph6=0
ph7=0
ph8=2
ph9=0 0 0 0 2 2 2 2
ph29=0
ph31=0 2 3 1 0 2 1 3


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;sp3: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)YH
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(1 * SW(X)) = 2 * DW(X)
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI (or TPPI)


;use gradient ratio:    gp 1 : gp 2 : gp 3 : gp 4
;                         24 :  -60 :   40 : 57.6

;for z-only gradients:
;gpz1: 24%
;gpz2: -60%
;gpz3: 40%
;gpz4: 57.6%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100



;Processing

;PHC0(F1): 90



;$Id:$
