;trosyzqgpphwg
;avance-version (12/01/11)
;ZQ-TROSY
;2D H-1/X correlation via TROSY
;   using sensitivity improvement
;phase sensitive
;using f3 - channel
;
;K.V. Pervushin, G. Wider, R. Riek & K. Wuethrich, 
;   Proc. Natl. Acad. Sci USA 96, 9607-9612 (1999)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d26=1s/(cnst4*4)"


"in0=inf1/2"

"d0=in0/2-5u"


"DELTA1=d26-p16-d16"
"DELTA2=p21+d0*2+10u"
"DELTA3=d26-p16-d16-p11-8u"
"DELTA4=d26-p16-d16-p11-p21-4u"


"l0=1"


1 ze 
2 d11
3 d1 pl0:f1
  50u UNBLKGRAD

  (p11:sp1 ph2):f1
  4u
  4u pl1:f1
  (p1 ph1)

  if "l0 %2 == 1"
     {
     (p21 ph3):f3
     }
  else
     {
     (p21 ph4):f3
     }

  p16:gp1
  d16
  DELTA1
  DELTA2

  (center (p2 ph1) (p22 ph1):f3 )
  DELTA1
  p16:gp1
  d16

  if "l0 %2 == 1"
     {
     (p21 ph5):f3
     }
  else
     {
     (p21 ph6):f3
     }
  d0 gron0
  d0 gron0*-1
  10u groff

  (p21 ph1):f3
  (p1 ph1 4u p1 ph7) 
  p16:gp2
  d16
  DELTA3
  (p11:sp1 ph8:r):f1
  4u
  4u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph8:r):f1
  DELTA4
  p16:gp2
  d16
  (p21 ph9):f3
  4u BLKGRAD

  go=2 ph31
  d11 mc #0 to 2 
     F1EA(calph(ph2, +180) & calph(ph7, +180) & calph(ph9, +180) & calclc(l0, 1), caldel(d0, +in0))
exit 
  

ph1=0
ph2=2
ph3=2 0 3 1
ph4=2 0 1 3
ph5=1 3 0 2
ph6=1 3 2 0
ph7=0
ph8=2
ph9=1
ph31=0 2 3 1


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;sp1: f1 channel - shaped pulse  90 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse                       [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [6 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d26 : 1/(4J)YH
;cnst4: = J(YH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: echo-antiecho


;use gradient ratio:    gp 0 : gp 1 : gp 2
;                          3 :   30 :   50

;for z-only gradients:
;gpz0: 3%
;gpz1: 30%
;gpz2: 50%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


;use AU-program xfshear to process data



;$Id:$
