;ut2_con_n_btrhn
;avance-version (21/09/15)
;routing: F1: C, F2: H, F3: N
;number of receivers used: 3
;
;M. Schiavina, M.G. Murrali, L. Pontoriero, V. Sainati, R. Kuemmerle, W. Bermel,
;   R. Pierattelli & I.C. Felli, Biophysical Journal 117, 46-55 (2019)
;
;Dataset 1 (F1)
;c_con_iasq
;avance-version (21/09/15)
;CON
;2D sequence with
;   13C detected correlation for triple resonance using 
;      inept transfer steps
;
;      F1(C=O) -> F3(N,t1) -> F1(C=O,t2)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;using IPAP scheme for virtual decoupling
;(use parameterset C_CON_IASQ)
;
;W. Bermel, I. Bertini,L. Duma, I.C. Felli, L. Emsley,  R. Pierattelli,
;   P.R. Vasos, Angew. Chem. Int. Ed. 44, 3089-3092 (2005)
;(L. Duma, S. Hediger, A. Lesage & L. Emsley,
;   J. Magn. Reson. 164, 187-195 (2003) )
;
;
;Dataset 2 (F2)
;dummy dataset
;
;
;Dataset 3 (F3)
;nb_hntrosy_f2ig
;avance-version (21/09/15)
;2D 15N shift correlation
;
;      F2(HN,t1) -> F3(N,t2)
;
;with refocussing of chemical shifts
;phase sensitive
;using semi-constant time in t1
;(use parameterset )
;
;(R. Schnieders, C. Richter, S. Warhaut, V. de Jesus, S. Keyhani, 
;   E. Duchardt-Ferner, H. Keller, J. Woehnert, L.T. Kuhn, A.L. Breeze,
;   W. Bermel, H. Schwalbe & B. Fuertig, ;   J. Biomol. NMR 69, 31-44 (2017) )
;(K. Takeuchi, H. Arthanari, I. Shimada & G. Wagner, J. Biomol. NMR 63, 1-9 (2015) )
;(K. Takeuchi, H. Arthanari, M. Imai & G. Wagner, J. Biomol. NMR 64, 143-151 (2016) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple_c>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p22=p21*2"
"d11=30m"
"d12=20u"
"d26=1s/(cnst4*4)"

"d22=4.5m"
"d23=16.6m"


"p42=(bwfac42/(cnst55*cnst52*bf2))*1000000"
"spw42=plw2*pow((p3*totrot42)/(p42*90.0*integfac42),2)"
"spoal42=0.5"
"spoffs42=0"

"p43=(bwfac43/(cnst55*cnst53*bf2))*1000000"
"spw43=plw2*pow((p3*totrot43)/(p43*90.0*integfac43),2)"
"spw44=plw2*pow((p3*totrot44)/(p43*90.0*integfac44),2)"
"spoal43=0"
"spoal44=1"
"spoffs43=0"
"spoffs44=0"


"in31=inf1/2"
"in32=in2/2"

"d31=3u"
"d32=in32/2-p39/2"


"d60=d1-(d61+d59)*4-d58"


"DELTA=d31"
"DELTA1=d23/2-p12/2"
"DELTA2=d23-d22-p12"
"DELTA11=d26-larger(p22,p42)/2-p16-d16"
"DELTA12=d26-larger(p22,p42)/2-p16-d16-p21*2/PI"
"DELTA13=d26-larger(p22,p42)/2-p16-d16-de"
"DELTA14=d23/2-p12/2"


"l0=0"
"l3=l22/2"
"l10=1"
"l13=trunc(td1/(l22*8))"
"l30=0"


"spoffs3=0"
"spoffs4=bf1*((cnst26-cnst22)/1000000)"
"spoffs13=bf1*((cnst26-cnst21)/1000000)"
"spoffs23=0"
"spoffs24=0"
"spoffs25=0"
"spoffs26=bf1*((cnst22-cnst21)/1000000)"
"spoffs27=bf1*((cnst21-cnst22)/1000000)"


1 4u ze1
  4u ze3 
2 d11 do:f3
  6m
3 3m
4 3m
5 6m
6 9m
7 3m
8 3m

  d60 

  goscnp2 ph31

  50u UNBLKGRAD
  p16:gp2
  d16 

;n_trhn

  d12 pl25:f1 pl3:f3
  20u fq=cnst22(bf ppm):f1
  20u fq=cnst54(bf ppm):f2

  "cnst31=(l30%2)*90"

  3m ip18+cnst31

11 d61

  (p39:sp4 ph17):f1

  if "l0 %2 == 1"
     {
     (p43:sp44 ph13+ph18):f2
     }
  else
     {
     (p43:sp44 ph14+ph18):f2
     }
  d32
  (p39:sp4 ph1+ph18):f1
  d32

  (p21 ph15+ph18):f3
  DELTA11
  p16:gp3
  d16
  4u
  (center (p42:sp42 ph1+ph18):f2 (p22 ph1+ph18):f3 )
  4u
  p16:gp3
  d16
  DELTA11
  (p21 ph1+ph18):f3

  (p43:sp43 ph2+ph18):f2
  DELTA12
  p16:gp4
  d16
  4u
  (center (p42:sp42 ph1+ph18):f2 (p22 ph1+ph18):f3 )
  4u
  p16:gp4
  d16
  DELTA13
  4u BLKGRAD
  (p43:sp44 ph16+ph18):f2

  if "l30 %2 == 0"
     {
     DELTA14
     (p12:sp27 ph1):f1
     DELTA14
     (p22 ph1):f3
     DELTA14
     (p12:sp27 ph17):f1
     DELTA14 pl25:f1
     }
  else
     {
     (p12:sp27 ph1):f1
     DELTA14
     DELTA14
     (p22 ph1):f3
     (p12:sp27 ph17):f1
     DELTA14
     DELTA14 pl25:f1
     }

  goscnp3 ph30 cpd1:f1

  4u do:f1
  lo to 11 times 4

;c_con

  50u UNBLKGRAD
  p16:gp5
  d16 

  20u pl3:f3
  20u fq=cnst21(bf ppm):f1
  20u fq=0(sfo ppm):f2

  (p11:sp23 ph1)
  d23
  (center (p12:sp24 ph1) (p22 ph1):f3 )
  d23
  (p11:sp25 ph2)

  p16:gp1
  d16

  (p21 ph3):f3
  d31
  (center (p8:sp13 ph5):f1 (p44:sp3 ph1):f2 )
  d31
  (p22 ph1):f3
  DELTA
  (center (p8:sp13 ph1):f1 (p44:sp3 ph7):f2 )
  DELTA
  (p21 ph4):f3

  if "l10 %2 == 1"
     {
     (p11:sp23 ph1)
     DELTA1
     (p12:sp26 ph1)
     DELTA1
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA1
     (p12:sp26 ph1)
     DELTA1 pl16:f3
     }
  else
     {
     (p11:sp23 ph6)
     d22
     (p12:sp26 ph1)
     DELTA2
     (center (p12:sp24 ph1) (p22 ph1):f3 )
     DELTA1
     DELTA1 pl16:f3
     (p12:sp26 ph1)
     }

  4u BLKGRAD

  go1=2 ph31 cpd3:f3

  d11 do:f3 wr1 #0 if1 #0 zd1
  3m wr2 #1 if2 #1 zd2

;exp_f1 ipap
  3m iu10
  lo to 3 times 2

;exp_f1 phase
  3m ip3
  lo to 4 times 2

;exp_f1 delay
  3m id31
  lo to 5 times l13

  3m wr3 #2 if3 #2 zd3

;exp_f2 ipap
  3m iu30
  lo to 6 times 2

;exp_f2 phase
  3m ip15*2
  3m ip16*2
  3m iu0
  lo to 7 times 2

;exp_f2 delay
  3m id32
  lo to 8 times l3


exit 
  

ph1=0 
ph2=1 
ph3=0 2
ph4=0 0 0 0 2 2 2 2 
ph5=0 0 2 2 
ph6=3
ph7=2
ph13=1 3 0 2
ph14=3 1 0 2
ph15=1
ph16=0
ph17=2
ph18=0
ph30=0 2 3 1
ph31=0 2 0 2 2 0 2 0

  
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl25: f1 channel - power level for CPD/BB decoupling
;sp3 : f2 channel - shaped pulse 180 degree (Bip720,50,20.1)
;sp4 : f1 channel - shaped pulse 180 degree (Bip720,100,10.1)
;sp13: f1 channel - shaped pulse 180 degree  (adiabatic)
;sp23: f1 channel - shaped pulse  90 degree  (on resonance)
;sp24: f1 channel - shaped pulse 180 degree  (on resonance)
;sp25: f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp26: f1 channel - shaped pulse 180 degree  (Ca off resonance)
;sp27: f1 channel - shaped pulse 180 degree  (C=O off resonance)
;sp42: f2 channel - shaped pulse 180 degree (Reburp.1000)
;sp43: f2 channel - shaped pulse  90 degree (Eburp2.1000)
;sp44: f2 channel - shaped pulse  90 degree (Eburp2tr.1000)
;p8 : f1 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p39: f1 channel - 180 degree shaped pulse for refocussing
;                      Bip720,100,10.1 (160us at 600.13 MHz)
;p42: f2 channel - 180 degree shaped pulse for refocussing
;                      Reburp.1000               (1.4ms at 600.13 MHz)
;p43: f2 channel -  90 degree shaped pulse for excitation
;                      Eburp2.1000/Eburp2tr.1000 (1.7ms at 600.13 MHz)
;p44: f2 channel - 180 degree shaped pulse for refocussing
;                      Bip720,50,20.1            (200us at 600.13 MHz)
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCO))                                      [16.6 msec]
;d26: 1/(4J)NH
;d31: incremented delay (2D, exp 1))                   [3 usec]
;d32: incremented delay (2D, exp 3)): in32/2-p39/2
;d58: = AQ of exp 2 (1H) - should be kept short
;d59: = AQ of exp 3 (15N)
;d60: remaining relaxation delay : d1-(d61+d59)*4-d58
;d61: relaxation delay of exp 3
;cnst4: = J(NH)
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst26: Call chemical shift (offset, in ppm)          [101 ppm]
;cnst52: scaling factor for p42 to compensate for transition region
;           Reburp.1000: 1.426
;cnst53: scaling factor for p43 to compensate for transition region
;           Eburp2.1000: 1.000
;cnst54: H(N) chemical shift (offset, in ppm)
;cnst55: H(N) bandwidth (in ppm)
;o1p (exp 1): CO chemical shift (cnst21)
;o2p (exp 1): H2O chemical shift
;o3p (exp 1): N chemical shift
;o1p (exp 3): N chemical shift
;o2p (exp 3): H(N) chemical shift (cnst54)
;l0 : flag to switch between odd and even increments (exp 3)
;l3 : loop for 2D exp 1 = l22/2
;l13: loop for 2D exp 3 = td1/(l22*8)
;        must be >= 1 (otherwise reduce l22 or increse td1 (exp 1))
;l10: flag to switch between inphase and antiphase (exp 1)
;l22: number of experiments in F1 for exp 3 (after IPAP processing)
;l30: flag to switch between inphase and antiphase (exp 3)
;inf1: 1/SW(N) = 2 * DW(N)
;in2 : 1/SW(H) = 2 * DW(H) (inf1 of exp 3)
;in31: 1/(2 * SW(N)) =  DW(N) (exp 1)
;nd31: 2
;in32: 1/(2 * SW(H)) = DW(H) (exp 3)
;nd32: 2
;ns: 8 * n
;ds: >= 32
;td1 (exp 1): number of experiments in F1 :  min. l22 * 8
;td1 (exp 3): number of experiments in F1 = l22 * 4
;FnMODE (exp 1): States-TPPI (or TPPI) in F1
;FnMODE (exp 3): echo-antiecho in F1
;cpd1: decoupling according to sequence defined by cpdprg1: p5m4sp180.p61
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 180 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence
;cpdprg1: p5m4sp180.p61


;for z-only gradients:
;gpz1: 50%
;gpz2: 70%
;gpz3: 31%
;gpz4: 19%
;gpz5: 45%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100



;use AU-program splitcomb [ipap 2] to process data for exp 1 (J = 53.8)
;use AU-program splitcomb [ipap 2] to process data for exp 3 (J = 15)


;Processing (exp 3)

;PHC0(F1): 67.5
;PHC1(F1): -180
;FCOR(F1): 1




;$Id: $
