;ut2_fhsqcf3_con
;avance-version (21/09/15)
;routing: F1: H, F2: C, F3: N
;number of receivers used: 2
;
;M. Schiavina, M.G. Murrali, L. Pontoriero, V. Sainati, R. Kuemmerle, W. Bermel,
;   R. Pierattelli & I.C. Felli, Biophysical Journal 117, 46-55 (2019)
;
;Dataset 1 (F1)
;fhsqcf3gpph
;2D H-1/X correlation via double inept transfer
;
;      F1(HN) -> F3(N,t1) -> F1(HN,t2)
;
;phase sensitive
;with decoupling during acquisition
;
;(S. Mori, C. Abeygunawardana, M. O'Neil-Johnson & P.C.M. van Zijl,
;   J. Magn. Reson. B 108, 94-98 (1995) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


;Dataset 2 (F2)
;CON
;2D sequence with
;   13C detected correlation for triple resonance using 
;      inept transfer steps
;
;      F1(C=O) -> F3(N,t1) -> F1(C=O,t2)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;using IPAP scheme for virtual decoupling
;(use parameterset C_CON_IASQ)
;
;W. Bermel, I. Bertini,L. Duma, I.C. Felli, L. Emsley,  R. Pierattelli,
;   P.R. Vasos, Angew. Chem. Int. Ed. 44, 3089-3092 (2005)
;(L. Duma, S. Hediger, A. Lesage & L. Emsley,
;   J. Magn. Reson. 164, 187-195 (2003) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d26=1s/(cnst4*4)"

"d22=4.5m"
"d23=16.6m"

"in31=inf1/2"
"in32=in2/2"

"d31=3u"
"d32=3u"


"DELTA=d19-p22/2"
"DELTA1=d26-p16-d16-p27*3-d19*5-p1*2/PI"
"DELTA2=d26-p16-d16-p27*2-p0-d19*5-de-8u"
"DELTA3=d31+larger(p2,p8)/2"
"DELTA4=p21*2/PI"
"DELTA5=d32*2+p8"
"DELTA6=d23/2-p14/2"
"DELTA7=d23-d22-p14"

"TAU=d26-p16-d16-4u"


"l0=1"

"l3=td1/2"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst22-cnst21)/1000000)"
"spoffs8=0"
"spoffs13=bf2*((cnst26-cnst21)/1000000)"


1 4u ze1 
  4u ze2 
2 d11 do:f1 do:f3
  3m
3 12m
4 6m
5 d1

; fhsqc

  20u fq=cnst47(bf ppm):f3
  d12 pl1:f1 pl3:f3
  50u UNBLKGRAD

  (p1 ph11)
  4u
  p16:gp1
  d16
  TAU pl3:f3
  (center (p2 ph11) (p22 ph16):f3 )
  4u
  TAU
  p16:gp1
  d16
  (p1 ph12) 

  4u
  p16:gp2
  d16
  (p8:sp13 ph17):f2
  4u

  (p21 ph13):f3
  DELTA3
  (p22 ph13):f3
  DELTA4
  d31
  (center (p2 ph15) (p8:sp13 ph11):f2 )
  d31
  DELTA4
  (p22 ph14):f3
  DELTA3
  (p21 ph14):f3

  4u
  p16:gp2
  d16

  (p1 ph17) 
  p16:gp3
  d16 pl18:f1
  DELTA1
  p27*0.231 ph18
  d19*2
  p27*0.692 ph18
  d19*2
  p27*1.462 ph18
  DELTA
  (p22 ph11):f3
  DELTA
  p27*1.462 ph19
  d19*2
  p27*0.692 ph19
  d19*2
  p0*0.231 ph19
  4u
  p16:gp3
  d16
  4u BLKGRAD
  DELTA2 pl16:f3

  goscnp1 ph31 cpd3:f3


; con

  4u do:f3
  50u UNBLKGRAD

  p16:gp5
  d16

  20u pl19:f1 pl3:f3
  20u fq=cnst21(bf ppm):f2
  20u fq=cnst57(bf ppm):f3
  d12 cpds1:f1

  (p13:sp2 ph1):f2
  d23
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d23
  (p13:sp8 ph2):f2

  p16:gp4
  d16

  (p21 ph3):f3
  d32
  (p8:sp13 ph5):f2
  d32
  (p22 ph1):f3
  DELTA5
  (p21 ph4):f3

  if "l0 %2 == 1"
     {
     (p13:sp2 ph1):f2
     DELTA6
     (p14:sp5 ph1):f2
     DELTA6
     (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
     DELTA6
     (p14:sp5 ph1):f2
     DELTA6 pl16:f3
     }
  else
     {
     (p13:sp2 ph6):f2
     d22
     (p14:sp5 ph1):f2
     DELTA7
     (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
     DELTA6
     DELTA6 pl16:f3
     (p14:sp5 ph1):f2
     }

  4u BLKGRAD
  go2=2 ph30 cpd3:f3

  d11 do:f1 do:f3 wr2 #1 if2 #1 zd2

;exp_f2 ipap
  3m iu0
  lo to 3 times 2

  3m wr1 #0 if1 #0 zd1

;exp_f1 phase
  3m ip13
  3m ip16
;exp_f2 phase
  3m ip3
  lo to 4 times 2

;exp_f1 delay
  3m id31
;exp_f2 delay
  3m id32
  lo to 5 times l3

exit 
  

ph1=0 
ph2=1 
ph3=0 2
ph4=0 0 0 0 2 2 2 2 
ph5=0 0 2 2 
ph6=3

ph11=0
ph12=1
ph13=0 2
ph14=0 0 0 0 2 2 2 2
ph15=0 0 2 2
ph16=0
ph17=2
ph18=1
ph19=3

ph30=0 2 0 2 2 0 2 0
ph31=0 2 0 2 2 0 2 0

  
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl18: f1 channel - power level for 3-9-19-pulse (watergate)
;pl19: f1 channel - power level for CPD/BB decoupling
;sp2 : f1 channel - shaped pulse  90 degree  (on resonance)
;sp3 : f1 channel - shaped pulse 180 degree  (on resonance)
;sp5 : f1 channel - shaped pulse 180 degree  (Ca off resonance)
;sp8 : f1 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp13: f1 channel - shaped pulse 180 degree  (adiabatic)
;p0 : f1 channel -  90 degree pulse at pl18
;                      use for fine adjustment
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f1 channel - 180 degree shaped pulse for inversion (adiabatic)
;p13: f1 channel -  90 degree shaped pulse
;p14: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p27: f1 channel -  90 degree pulse at pl18
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d19: delay for binomial water suppression
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCO))                                      [16.6 msec]
;d26: 1/(4J(NH))
;d31: incremented delay (2D, exp 1)                    [3 usec]
;d32: incremented delay (2D, exp 2)                    [3 usec]
;cnst4: = J(NH)
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst26: Call chemical shift (offset, in ppm)          [101 ppm]
;cnst47: N(H) chemical shift (offset, in ppm)
;cnst57: N chemical shift (offset, in ppm)
;o2p (exp 1): CO chemical shift (cnst21)
;o3p (exp 1): N(H) chemical shift (cnst47)
;o1p (exp 2): CO chemical shift (cnst21)
;o3p (exp 2): N chemical shift (cnst57)
;l0: flag to switch between inphase and antiphase
;l3 : loop for 2D experiment = td1/2
;inf1: 1/SW(N) = 2 * DW(N)
;in2 : 1/SW(N) = 2 * DW(N) (inf1 of exp 2, N all)
;in31: 1/(2 * SW(N)) =  DW(N) (exp 1)
;nd31: 2
;in32: 1/(2 * SW(N)) =  DW(N) (exp 2)
;nd32: 2
;ns: 8 * n
;ds: >= 32
;td1 (exp 1): number of experiments in F1
;td1 (exp 2): = td1 (exp 1) * 2
;FnMODE (exp 1): States-TPPI (or TPPI) in F1
;FnMODE (exp 2): States-TPPI (or TPPI) in F1
;cpds1: decoupling according to sequence defined by cpdprg1
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 80%
;gpz3: 31%
;gpz4: 19%
;gpz5: 60%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100



;use AU-program splitcomb [ipap 2] to process data for exp 2



;$Id: $
