;ut2_n_hcan_con
;avance-version (21/09/15)
;routing: F1: N, F2: C, F3: H
;number of receivers used: 2
;
;M. Schiavina, M.G. Murrali, L. Pontoriero, V. Sainati, R. Kuemmerle, W. Bermel,
;   R. Pierattelli & I.C. Felli, Biophysical Journal 117, 46-55 (2019)
;
;Dataset 1 (F1)
;n_hcan
;avance-version (21/09/15)
;2D sequence with
;   15N detected correlation for triple resonance using
;      inept transfer steps
;
;      F3(Ha) -> F2(Ca,t1) -> F1(N,t2)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;using constant time in t1
;(use parameterset )
;
;M. Gal, K. A. Edmonds, A. G. Milbradt, K. Takeuchi & G. Wagner,
;   J Biomol NMR 51, 497-504 (2011)
;(K. Takeuchi, G. Heffron, Z.-Y. J. Sun, D. P. Frueh & G. Wagner,
;   J Biomol NMR 47, 271-282 (2010))
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


;Dataset 2 (F2)
;c_con_iasq
;avance-version (21/09/15)
;CON
;2D sequence with
;   13C detected correlation for triple resonance using 
;      inept transfer steps
;
;      F2(C=O) -> F1(N,t1) -> F2(C=O,t2)
;
;on/off resonance 13C pulses using shaped pulses
;phase sensitive (t1)
;using IPAP scheme for virtual decoupling
;(use parameterset )
;
;W. Bermel, I. Bertini,L. Duma, I.C. Felli, L. Emsley,  R. Pierattelli,
;   P.R. Vasos, Angew. Chem. Int. Ed. 44, 3089-3092 (2005)
;(L. Duma, S. Hediger, A. Lesage & L. Emsley,
;   J. Magn. Reson. 164, 187-195 (2003) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"
"p22=p21*2"
"d3=1s/(cnst2*cnst12)"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"

"d22=4.5m"
"d23=12.4m"
"d25=16.6m"
"d27=14.3m"


"d32=3u"
"d31=d27/2-d3-p22/2"
"d41=d27/2-larger(p14,p22)/2"
"d51=d23-d27/2-p14/2-p2/2"

"in31=inf1/4"
"in32=in2/2"

"in41=in31"
"in51=in31"

"td1=tdmax(td1,d41*2,in41)"


"d58=aq"
"d60=d1-(d61+d58)*3"


"DELTA1=d27-d23-p2/2"
"DELTA2=d3-p14/2-p22/2"
"DELTA3=d25/2"
"DELTA4=d23-d25/2-p14"
"DELTA5=d25-d23"
"DELTA6=d25/2-d12+p1*2/PI-de-4u"
"DELTA7=d32*2+p8"
"DELTA8=d25/2-p14/2"
"DELTA9=d25-d22-p14"


"spoffs2=0"
"spoffs3=0"
"spoffs5=bf2*((cnst21-cnst22)/1000000)"
"spoffs7=bf2*((cnst22-cnst21)/1000000)"
"spoffs8=0"
"spoffs13=bf2*((cnst26-cnst21)/1000000)"
"spoffs20=bf2*((cnst23-cnst22)/1000000)"

"l0=0"
"l10=0"

"l3=td1/4"


;"o1_F1=bf2*cnst22/1000000"


"acqt0=0"
baseopt_echo


1 4u ze1
  4u ze2
2 d11 do:f1 do:f3
  3m
3 3m
4 9m
5 3m
6 9m
7 3m

  d60

;n_hcan

8 d11 do:f2 do:f3
  d61

  50u UNBLKGRAD
  4u pl1:f1 pl3:f3

  (p1 ph1):f1
  p16:gp1
  d16 fq=cnst22(bf ppm):f2

  (p21 ph1):f3
  d4
  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )
  d4
  (p21 ph2):f3

  (p13:sp2 ph3):f2
  d41
  (center (p14:sp5 ph1):f2 (p22 ph1):f3 )
  d41
  (p14:sp20 ph1):f2
  DELTA1
  (p2 ph1):f1
  d51
  (p14:sp5 ph10):f2
  DELTA2
  (p22 ph1):f3
  d31
  (p13:sp8 ph4):f2

  4u
  p16:gp2
  d16 pl16:f3
  20u cpd3:f3

  if "l0 %2 == 0"
     {
     (p1 ph5):f1
     DELTA3
     (p14:sp5 ph1):f2
     DELTA4
     (p14:sp3 ph1):f2
     DELTA5
     (p2 ph6):f1
     DELTA3
     (p14:sp5 ph10):f2
     }
  else
     {
     (p1 ph7):f1
     (p14:sp5 ph1):f2
     DELTA3
     DELTA4
     (p14:sp3 ph1):f2
     DELTA5
     (p2 ph6):f1
     (p14:sp5 ph10):f2
     DELTA3
     }

  DELTA6
  d12 pl28:f2
  4u BLKGRAD

  goscnp1 ph31 cpd2:f2
  lo to 8 times 3
  
   
;c_con

  4u do:f2 do:f3
  50u UNBLKGRAD

  p16:gp3
  d16 fq=cnst21(bf ppm):f2

  4u pl1:f1 pl16:f3
  4u cpd3:f3

  (p13:sp2 ph1):f2
  d25
  (center (p2 ph1):f1 (p14:sp3 ph1):f2 )
  d25 
  (p13:sp8 ph2):f2

  p16:gp4
  d16

  (p1 ph13):f1
  d32
  (p8:sp13 ph15):f2
  d32
  (p2 ph1):f1
  DELTA7
  (p1 ph14):f1

  if "l10 %2 == 0"
     {
     (p13:sp2 ph1):f2
     DELTA8
     (p14:sp7 ph1):f2
     DELTA8
     (center (p2 ph1):f1 (p14:sp3 ph1):f2 )
     DELTA8
     (p14:sp7 ph1):f2
     DELTA8 pl19:f1
     }
  else
     {
     (p13:sp2 ph16):f2
     d22
     (p14:sp7 ph1):f2
     DELTA9
     (center (p2 ph1):f1 (p14:sp3 ph1):f2 )
     DELTA8
     DELTA8 pl19:f1
     (p14:sp7 ph1):f2
     }

  4u BLKGRAD

  go2=2 ph30 cpd1:f1

  d11 do:f1 do:f3 wr2 #1 if2 #1 zd2  

;exp_f2 ipap
  3m iu10
  lo to 3 times 2

;exp_f2 phase
  3m ip13
  lo to 4 times 2
 
  3m wr1 #0 if1 #0 zd1

;exp_f1 ipap
  3m iu0

;exp_f2 delay
  3m id32
  lo to 5 times 2

;exp_f1 phase
  3m dp3
  lo to 6 times 2

;exp_f1 delay
  3m id31
  3m dd41
  3m id51

  lo to 7 times l3

exit


ph1=0
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2 
ph5=0 0 2 2 
ph6=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2 
ph7=1 1 3 3 
ph10=2

ph13=0 2
ph14=0 0 0 0 2 2 2 2
ph15=0 0 2 2
ph16=3

ph29=0
ph30=0 2 0 2 2 0 2 0
ph31=0 2 2 0 2 0 0 2 


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl19: f1 channel - power level for CPD/BB decoupling
;pl28: f2 channel - power level for CPD/BB decoupling
;sp2: f2 channel - shaped pulse  90 degree  (on resonance)
;sp3: f2 channel - shaped pulse 180 degree  (on resonance)
;sp5: f2 channel - shaped pulse 180 degree  (C=O off resonance)
;sp7: f2 channel - shaped pulse 180 degree  (Ca off resonance)
;sp8: f2 channel - shaped pulse  90 degree  (on resonance)
;                   for time reversed pulse
;sp13: f2 channel - shaped pulse 180 degree  (adiabatic)
;sp23: f2 channel - shaped pulse 180 degree  (Cali off resonance)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p13: f2 channel -  90 degree shaped pulse
;p14: f2 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d1 : relaxation delay as executed; 1-5 * T1
;d3 : 1/(n*J(CH)), n = cnst12
;d4 : 1/(4J(CH))
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;d22: 1/(4J(COCa))                                     [4.5 msec]
;d23: 1/(4J(NCO))                                      [12.4 msec]
;d25: 1/(4J'(NCO))                                     [16.6 msec]
;d27: 1/(2J(CaCb))                                     [14.3 msec]
;d31 : incremented delay (2D, exp 1) = d27/2-d3-p22/2
;d32 : incremented delay (2D, exp 2)             [3 usec]
;d41: decremented delay (2D, exp 1) = d27/2-larger(p14,p22)/2
;d51: incremented delay (2D) = d23-d27/2-p14/2-p2/2
;d58: = AQ of exp 1 (15N)
;d59: = AQ of exp 2 (13C)
;d61: relaxation delay for exp 1
;cnst2: = J(CH)                                        [145 Hz] 
;cnst12: for multiplicity selection = 4 for all but Gly, 5 including Gly 
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;cnst23: Caliphatic chemical shift (offset, in ppm)
;cnst26: Call chemical shift (offset, in ppm)          [101 ppm]
;o1p (exp 1): N chemical shift
;o2p (exp 1): CO chemical shift (cnst21)
;o1p (exp 2): CO chemical shift (cnst21)
;o2p (exp 2): N chemical shift
;l0 : flag to switch between inphase and antiphase (exp 1)
;l3 : loop for 2D experiment = td1/4
;l10: flag to switch between inphase and antiphase (exp 2)
;inf1: 1/SW(Ca) = 2 * DW(Ca)
;in2 : 1/SW(N) = 2 * DW(N) (inf1 of exp 2)
;in31: 1/(4 * SW(Ca)) = (1/2) DW(Ca)
;nd31: 4
;in32: 1/(2 * SW(N)) = DW(N)
;nd32: 2
;in42: = in32 
;in52: = in32 
;ns: 4 * n
;ds: >= 32
;td1 (exp 1): number of experiments in F1
;td1 (exp 2): number of experiments in F1 = td1 (exp 1) * 4
;FnMODE (exp 1): States-TPPI (or TPPI) in F1
;FnMODE (exp 2): States-TPPI (or TPPI) in F1
;cpd1: decoupling according to sequence defined by cpdprg1
;cpd2: decoupling according to sequence defined by cpdprg2: p5m4sp180.p31
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence
;pcpd2: f2 channel - 180 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence
;cpdprg2: p5m4sp180.p31


;for z-only gradients:
;gpz1: 50% 
;gpz2: 40%
;gpz3: 60%
;gpz4: 30%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100



;Processing

;use AU-program splitcomb [ipap 2] to process data for exp 1 (J = 15)
;use AU-program splitcomb [ipap 2] to process data for exp 2 (J = 53.8)

;SR(F1) (exp 1): -spoffs5






;$Id: $
