;ut2_noesygpphpp_zgig
;avance-version (18/05/08)
;
;Dataset 1 (F1)
;noesygpphpp
;2D homonuclear correlation via dipolar coupling 
;dipolar coupling may be due to noe or chemical exchange.
;phase sensitive
;with gradient pulses in mixing time
;using purge pulses before d1
;
;J. Jeener, B.H. Meier, P. Bachmann & R.R. Ernst, J. Chem. Phys. 71,
;   4546-4553 (1979)
;R. Wagner & S. Berger, J. Magn. Reson. 123 A, 119-121 (1996)
;
;Dataset 2 (F2)
;zgig
;1D sequence with inverse gated decoupling
;
;2D experiment leads to NOE for the 1D
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d11=30m"
"d12=20u"


"in0=inf1"

"d0=in0/2-p1*4/3.1416"


"TAU=d8*0.5-p16-d16"


"l3=td1/2"


"acqt0=-p1*2/3.1416"


1 ze1
  ze2
  
2 d11 do:f1
  9m
3 3m

4 d12 pl10:f1
  p17 ph4
  p17*2 ph5
  d1 pl1:f1
  
; exp 1

  p1 ph1
  d0
  p1 ph2
  TAU UNBLKGRAD
  p16:gp1
  d16
  3u
  (p2 ph4):f1
  3u
  p16:gp1*-1
  d16
  TAU BLKGRAD
  p1 ph3
  goscnp1 ph31
  
; exp 2
  
  d12 pl19:f1
  (p3 ph11):f2
  go2=2 ph30 cpd1:f1
  
  d11 do:f1 wr1 #0 if1 #0 zd1
  3m wr2 #1
  3m zd2
  
;exp_f1 phase
  3m ip1
  lo to 3 times 2

;exp_f1 delay  
  3m id0
  lo to 4 times l3

exit


ph1=0 2 
ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3=0 0 2 2 1 1 3 3
ph4=0
ph5=1
ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3

ph11=0 2 2 0 1 3 3 1
ph30=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl19: f1 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  high power pulse
;p16: homospoil/gradient pulse                            [1 msec]
;p17: f1 channel - trim pulse                             [2.5 msec]
;d0 : incremented delay (2D) = in0/2-p1*4/3.1416
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                           [20 usec]
;d16: delay for homospoil/gradient recovery
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: undefined
;cpd1: decoupling according to sequence defined by cpdprg1
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 40%

;use gradient files:   
;gpnam1: SMSQ10.100


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1


;$Id:$
