;ut2_roesyadjsph_zgig
;avance-version (21/09/15)
;
;Dataset 1 (F1)
;roesyadjsph
;2D EASY ROESY
;jump-symmetrized with adiabatic spinlocks for mixing
;with presaturation during relaxation delay
;phase sensitive
;
;C.M. Thiele, K. Petzold & J. Schleucher, 
;   Chem. Eur. J. 15, 585-588 (2009)
;J. Schleucher, J. Quant, S. Glaser & C. Griesinger, 
;   J. Magn. Reson A 112, 144-151 (1995)
;
;Dataset 2 (F2)
;zgig
;1D sequence with inverse gated decoupling
;
;2D experiment leads to NOE for the 1D
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>


define pulse P_SL


"cnst24=1000000.0*tan((cnst28*2*PI)/360.0)/(dw*4)"

"if ( cnst24 > 6500 ) {cnst25 = 6400.0;} else {cnst25 = cnst24;}"
"if ( cnst24 > 6500 ) {cnst29 = atan(cnst25*4*dw/1000000.0)*360.0/(2*PI);} else {cnst29=cnst28;}"

"if (cnst26<cnst25) {cnst27=cnst25;} else {if (cnst26>6500) {cnst27=6400;} else {cnst27=cnst26;} }"


"cnst30=abs(cnst27/tan((cnst29*2*PI)/360.0))"

define list<frequency> roesylist={sfo hz, 0.0, cnst30, -cnst30, 0}


"p30=1000000.0/(cnst27*4)"

"cnst31= (p30/p1) * (p30/p1)"

"spw12=plw1/cnst31"
"spw13=plw1/cnst31"
"spw16=plw1/cnst31"
"spw17=plw1/cnst31"
"spw41=plw1/cnst31"

"cnst23=cnst30+cnst31+p30"


"d11=30m"
"d12=20u"

"p41=1m"


"in0=inf1"

"d0=in0/2-p1*4/3.1416" 


"P_SL=p15/2"


"l3=td1/2"


"spoffs12=0"
"spoffs13=0"
"spoffs16=0"
"spoffs17=0"
"spoffs41=0"


1 ze1
  ze2

2 d11 do:f1
  9m
3 3m


4 d1

; exp 1

  d12 roesylist:f1
  4u roesylist.inc
  d12 pl1:f1
  50u UNBLKGRAD

  (p1 ph1):f1
  d0
  (p1 ph2):f1
  4u
  p16:gp1
  d16 roesylist:f1
  4u roesylist.inc

  (p41:sp12 ph2):f1
  (P_SL:sp41 ph2):f1
  (p41:sp13 ph2):f1

  4u
  4u roesylist:f1
  4u roesylist.inc

  (p41:sp16 ph2):f1
  (P_SL:sp41 ph2):f1
  (p41:sp17 ph2):f1

  4u
  p16:gp2
  d16 roesylist:f1
  4u roesylist.inc
  4u pl1:f1
  4u BLKGRAD
  (p1 ph3)

  goscnp1 ph30 


; exp 2

  20u pl19:f1
  (p3 ph11):f2
  go2=2 ph31 cpd1:f1

  d11 do:f1 wr1 #0 if1 #0 zd1
  3m wr2 #1
  3m zd2

;exp_f1 phase
  3m ip1
  lo to 3 times 2

;exp_f1 delay
  3m id0
  lo to 4 times l3

exit
  

ph1=0 2
ph2=0
ph3=2 2 0 0 3 3 1 1

ph11=0 2 2 0 1 3 3 1

ph30=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1



;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl19: f1 channel - power level for CPD/BB decoupling
;sp12: f1 channel - shaped pulse for adiabatic ramp down (lowfield, positive offset) (= pl1 + cnst31)
;spnam12: Gaussramp+down.1
;sp13: f1 channel - shaped pulse for adiabatic ramp up (lowfield, positive offset) (= pl1 + cnst31)
;spnam13: Gaussramp+up.1
;sp16: f1 channel - shaped pulse for adiabatic ramp down (highfield, negative offset) (= pl1 + cnst31)
;spnam16: Gaussramp-down.1
;sp17: f1 channel - shaped pulse for adiabatic ramp up (highfield, negative offset) (= pl1 + cnst31)
;spnam17: Gaussramp-up.1
;sp41: f1 channel - shaped pulse for ROESY-spinlock (= pl1 + cnst31)
;spnam41: Squa100.1000
;p1 : f1 channel -  90 degree high power pulse
;p3 : f2 channel -  high power pulse
;p15: f1 channel - pulse for ROESY spinlock
;p16: homospoil/gradient pulse                         [1 msec]
;p30: f1 channel -  90 degree pulse at sp41
;p41: f1 channel - shaped pulse for adiabatic ramp     [1 msec]
;d0 : incremented delay (2D) = in0/2-p1*4/3.1416
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d12: delay for power switching                        [20 usec]
;d16: delay for homospoil/gradient recovery
;cnst23; (for display purpose only)
;cnst24: min. RF field strength to make sure that the carrier is shifted 
;           to the edge of the spectrum
;cnst25: reduced min. RF field strength in case an upper limit of 6.5kHz is exceeded 
;           (set to 6.4kHz), this leads to a recalculation of the tilt angle (cnst29)
;cnst26: requested RF field strength (gammaB1) for ROESY spinlock
;           reduced to 6.4kHz if an upper limit of 6.5kHz is exceeded
;cnst27: used RF field strength (gammaB1) for ROESY spinlock
;cnst28: requesetd tilt angle for ROESY spinlock (between axis of spinlock and z-axis) [45 degree]
;cnst29: used tilt angle for ROESY spinlock (between axis of spinlock and z-axis) 
;cnst30: low and highfield offset, 
;          calculated from gammaB1 (cnst27) for tilt angle (cnst29)
;cnst31: difference in power level (dB) for spinlock relative to pl1
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: undefined
;cpd1: decoupling according to sequence defined by cpdprg1
;pcpd1: f1 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 31%
;gpz2: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



;$Id: $
