;wetdcps0
;avance-version (18/05/07)
;WET solvent suppression with shape pulse
;using variable flip angle read pulse
;with C-13 low power decoupling on f2 during WET and AQ
;using shaped pulse for off-resonance presaturation
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<lcnmr>


#include <Avance.incl>
#include <Grad.incl>


"d11=30m"
"d16=2m"


"if (d1/p18 < 1) {l6=1;} else {l6=d1/p18;}"


#   ifdef ERNSTANG
"cnst18=DEG*(acos(1*(exp(-(d1+aq)/cnst10))))"
#  endif /* ERNSTANG */ 

"p0=p1*(cnst18/90.0)"


"acqt0=-tan((p0/p1)*(PI/4))*p1*2/PI"


1 ze
  d11 pl14:f2
2 30m
  20u do:f2 BLKGRAD
  d1
  50u UNBLKGRAD

3 p18:sp6:f1 ph29
  4u
  lo to 3 times l6

  20u
  4u cpd2:f2
  (p11:sp7 ph2):f1
  4u
  p16:gp21
  d16
  (p11:sp8 ph3):f1
  4u
  p16:gp22
  d16
  (p11:sp9 ph3):f1
  4u
  p16:gp23
  d16
  (p11:sp10 ph3):f1
  4u do:f2
  p16:gp24
  d16 pl1:f1
  p0 ph1
  go=2 ph31 cpd2:f2
  d11 do:f2
  30m mc #0 to 2 F0(zd)
  20u BLKGRAD			
exit


ph1=1 3 3 1 2 0 0 2
ph2=0
ph3=1
ph29=0
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl14: f2 channel - power level for low power decoupling
;sp1: f1 channel - shaped pulse
;        powerlevel for 90 degree pulse
;sp6: f1 channel - shaped pulse for presaturation
;sp7: f1 channel - shaped pulse
;sp8: f1 channel - shaped pulse
;sp9: f1 channel - shaped pulse
;sp10: f1 channel - shaped pulse
;p0 : for any flip angle
;p1 : f1 channel -  90 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse                       [2msec]
;p18: f1 channel - presaturation using shaped pulse
;p31: f2 channel - 90 degree pulse for low power decoupling sequence
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;cnst10: estimated or measured T1 of sample
;cnst18: flip angle in degree
;cpd2: decoupling according to sequence defined by cpdprg2 : garp.p31
;l6: p18 * l6 = total duration of presaturation
;ns: 8 * n, total number of scans: NS * TD0
;ds: 16


;use 100msec pulse of square shape defined by 1000 points


;for z-only gradients:
;gpz21: 80%
;gpz22: 40%
;gpz23: 20%
;gpz24: 10%

;use gradient files:   
;gpnam21: SMSQ10.100
;gpnam22: SMSQ10.100
;gpnam23: SMSQ10.100
;gpnam24: SMSQ10.100


;use power levels               sp7        sp8        sp9        sp10
;                       sp1     +0.87      -1.04      +2.27      -5.05


                                          ;preprocessor-flags-start
;ERNSTANG: to use the ernst-angle, enter T1 as cnst10 
;             option -DERNSTANG (eda: ZGOPTNS) 
                                          ;preprocessor-flags-end



;$Id:$
