;xhcoetgp
;avance-version (12/01/11)
;2D X/H-1 correlation via inept transfer
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"p4=p3*2"
"d3=1s/(cnst2*cnst11)"
"d4=1s/(cnst2*4)"
"d11=30m"
"d13=4u"


"d0=3u"

"in0=inf1/2"


"DELTA1=d3-p16-p2-d0*2"
"DELTA2=d4-p16-d13-4u"


1 ze
  d11 pl12:f2
2 d1 do:f2 
3 d11 pl2:f2 UNBLKGRAD
  (p3 ph3):f2
  d0 
  p2 ph5
  d0
  p16:gp1*EA
  DELTA1
  (center (p2 ph1) (p4 ph1):f2 )
  d3
  (p1 ph1) (p3 ph4):f2
  d4
  (center (p2 ph1) (p4 ph1):f2 )
  d13
  p16:gp2
  DELTA2 pl12:f2
  4u BLKGRAD
  go=2 ph31 cpd2:f2
  d1 do:f2 mc #0 to 2 
     F1EA(calgrad(EA), caldel(d0, +in0) & calph(ph3, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=1 1 1 1 3 3 3 3
ph5=0 0 2 2
ph31=0 2 0 2 2 0 2 0
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                  [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d3 : 1/(6J(XH))  for all multiplicities
;     1/(4J(XH))  XH only
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;cnst11: 6  for all multiplicities
;        4  XH only
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1 : gp 2
;			  80 : 20.1    for C-13
;			  80 :  8.1    for N-15

;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
