;zgcw30
;avance-version (18/04/13)
;1D sequence with CW decoupling
;using 30 degree flip angle
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"d11=30m"


"p0=p1/3"


"acqt0=-tan((p0/p1)*(PI/4))*p1*2/PI"


1 ze
  d11 pl26:f2 
  d11 cw:f2
2 30m
  d1
  p0 ph1
  go=2 ph31
  30m mc #0 to 2 F0(zd)
  d11 do:f2
exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl26: f2 channel - power level for cw decoupling
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;ns: 1 * n, total number of scans: NS * TD0



;$Id:$
