;zgdcf2igf3
;avance-version (12/01/11)
;1D sequence with decoupling
;   continuous decoupling for f2 channel
;   inverse gated decoupling for f3 channel
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"d11=30m"


"acqt0=-p1*2/3.1416"


1 ze
  d11 pl12:f2 pl16:f3
  d11 cpd2:f2
2 30m do:f3
  d1
  p1 ph1
  go=2 ph31 cpd3:f3
  30m do:f3 mc #0 to 2 F0(zd)
  d11 do:f2
exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;ns: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence



;$Id:$
