;zgesfpgp
;avance-version (12/01/11)
;1D sequence
;water suppression using excitation sculpting with gradients
;with additional flipback pulse
;
;T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d12=20u"


"TAU=de+p1*2/3.1416+50u"


"acqt0=0"
baseopt_echo


1 ze
2 30m
  d1 pl1:f1 BLKGRAD

  (p29:sp11 ph6):f1
  2u
  2u pl1:f1
  (p1 ph1)
  
  50u UNBLKGRAD
  p16:gp1
  d16 pl0:f1
  (p12:sp1 ph2:r):f1
  4u
  d12 pl1:f1

  (p2 ph3)

  4u
  p16:gp1
  d16 
  TAU
  p16:gp2
  d16 pl0:f1
  (p12:sp1 ph4:r):f1
  4u
  d12 pl1:f1

  (p2 ph5)

  4u
  p16:gp2
  d16

  go=2 ph31
  30m mc #0 to 2 F0(zd)
  4u BLKGRAD
exit


ph1=0
ph2=0 1
ph3=2 3
ph4=0 0 1 1
ph5=2 2 3 3
ph6=2
ph31=0 2 2 0 


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;sp1 : f1 channel - shaped pulse 180 degree
;sp11: f1 channel - shaped pulse  90 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse (Squa100.1000)   [2 msec]
;p16: homospoil/gradient pulse
;p29: f1 channel -  90 degree shaped pulse (flipback pulse)
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                             [20 usec]
;d16: delay for homospoil/gradient recovery
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4


;use gradient ratio:    gp 1 : gp 2
;                         31 :   11

;for z-only gradients:
;gpz1: 31%
;gpz2: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
