;zggegp
;avance-version (12/01/11)
;1D gradient echo
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>


1 ze
2 30m
  d1
  p1 ph1
  50u UNBLKGRAD
  p16:gp1
  d16
  p16:gp2
  d16
  30u
  20u BLKGRAD
  go=2 ph31
  30m mc #0 to 2 F0(zd)
exit


ph1=0 0 1 1 2 2 3 3
ph2=1 3
ph31=0 0 1 1 2 2 3 3


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;d1 : relaxation delay; 1-5 * T1
;d16: delay for homospoil/gradient recovery
;ns: 2 * n, total number of scans: NS * TD0


;use gradient ratio:	gp 1 : gp 2
;			   1 :   -1

;for z-only gradients:
;gpz1: 1%
;gpz2: -1%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
