;zggppewg
;avance-version (13/08/01)
;1D sequence
;water suppression using watergate sequence
;
;R.W. Adams, C.M. Holroyd, J.A. Aguilar, M. Nilsson & G.A. Morris,
;   Chem. Commun. 49, 358-360 (2013)
;(M. Piotto, V. Saudek & V. Sklenar, J. Biomol. NMR 2, 661 - 666 (1992) )
;(V. Sklenar, M. Piotto, R. Leppik $ V. Saudek, J. Magn. Reson., 
;   Series A 102, 241 -245 (1993) )
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d12=20u"


"DELTA1=p11+d12+8u"


1 ze
2 30m
  d1 pl1:f1
  50u UNBLKGRAD
  
  (p1 ph1)
  p16:gp1
  d16
  DELTA1
  (p2 ph4)
  DELTA1
  p16:gp1
  d16

  (p1 ph5)

  4u
  p16:gp2
  d16
  (p11:sp1 ph2:r):f1
  4u
  d12 pl1:f1
  (p2 ph3)
  4u
  d12
  (p11:sp1 ph2:r):f1
  4u
  p16:gp2
  d16
  4u BLKGRAD
  go=2 ph31
  30m mc #0 to 2 F0(zd)
exit


ph1=0 2
ph2=0 0 1 1 2 2 3 3 
ph3=2 2 3 3 0 0 1 1
ph4=0
ph5=1
ph31=0 2 2 0


;pl1 : f1 channel - power level for pulse (default)
;sp1 : f1 channel - shaped pulse  90 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4


;for z-only gradients:
;gpz1: 11%
;gpz2: 31%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
