;zggpwg
;avance-version (20/06/19)
;1D sequence
;water suppression using watergate sequence
;
;M. Piotto, V. Saudek & V. Sklenar, J. Biomol. NMR 2, 661 - 666 (1992)
;V. Sklenar, M. Piotto, R. Leppik $ V. Saudek, J. Magn. Reson., 
;   Series A 102, 241 -245 (1993)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"p2=p1*2"
"d12=20u"


"TAU=p1*2/PI-de+46u"


"acqt0=0"
baseopt_echo


1 ze
2 30m
  d1 
  10u pl1:f1

  p1 ph1
  50u UNBLKGRAD
  p16:gp1
  d16 pl0:f1
  (p11:sp1 ph2:r):f1
  4u
  d12 pl1:f1
  (p2 ph3)
  4u
  d12 pl0:f1
  (p11:sp1 ph2:r):f1
  TAU
  p16:gp1
  d16
  4u BLKGRAD
  go=2 ph31
  30m mc #0 to 2 F0(zd)
exit


ph1=0 2
ph2=0 0 1 1 2 2 3 3 
ph3=2 2 3 3 0 0 1 1
ph31=0 2 2 0


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;sp1 : f1 channel - shaped pulse  90 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4


;for z-only gradients:
;gpz1: 20%

;use gradient files:   
;gpnam1: SMSQ10.100



;$Id:$
