;zghc.3
;avance-version (12/01/11)
;1D sequence with homodecoupling of a region
;for AVIII only
;
;A. Hammarstroem & G. Otting, J. Am. Chem. Soc. 116, 8847-8 (1994)
;E. Kupce, J. Boyd & R. Freeman, J. Magn. Reson. B106, 300-303 (1995)
;J. Weigelt, A. Hammarstroem, W. Bermel & G. Otting,
;   J. Magn. Reson. B110, 219-224 (1996)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"d12=20u"


1 ze
  d12 pl24:f2
2 30m do:f2
  d1
  p1 ph1
  go=2 ph31 cpdhd2:f2
  30m do:f2 mc #0 to 2 F0(zd)
exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl24: f2 channel - power level for hd/hc decoupling
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                      [20 usec]
;ns: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
