;zgig2h
;avance-version (12/01/11)
;1D sequence with inverse gated decoupling
;using 2H lockswitch unit or BSMS 2H-TX board
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"d11=30m"
"d12=20u"


"acqt0=-p1*2/3.1416"


1 ze
  d11 pl12:f2 LOCKDEC_ON
  50u LOCKH_ON
  d11 H2_PULSE

2 30m do:f2 
  30m H2_LOCK
  6m LOCKH_OFF
  d1
  50u LOCKH_ON
  d12 H2_PULSE
  p1 ph1
  go=2 ph31 cpd2:f2
  30m do:f2 mc #0 to 2 F0(zd)

  d11 H2_LOCK 
  d11 LOCKH_OFF
  d11 LOCKDEC_OFF
exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;ns: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
