;zgig2hf4
;avance-version (12/01/11)
;1D sequence with inverse gated decoupling
;using 2H lockswitch unit or BSMS 2H-TX board
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"d11=30m"
"d12=20u"


"acqt0=-p1*2/3.1416"


1 ze
  d11 pl17:f4 LOCKDEC_ON
  50u LOCKH_ON
  d11 H2_PULSE

2 30m do:f4
  30m H2_LOCK
  6m LOCKH_OFF
  d1
  50u LOCKH_ON
  d12 H2_PULSE
  p1 ph1
  go=2 ph31 cpd4:f4
  30m do:f4 mc #0 to 2 F0(zd)

  d11 H2_LOCK 
  d11 LOCKH_OFF
  d11 LOCKDEC_OFF
exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl17: f4 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;ns: 1 * n, total number of scans: NS * TD0
;cpd4: decoupling according to sequence defined by cpdprg4
;pcpd4: f4 channel - 90 degree pulse for decoupling sequence



;$Id:$
