;zgiglh
;avance-version (12/01/11)
;1D sequence with inverse gated decoupling
;lock hold on during acquisition
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>

"d11=30m"


"acqt0=-p1*2/3.1416+4u"


1 ze
  d11 pl14:f2
2 30m do:f2 LOCKH_OFF
  d1
  4u LOCKH_ON
  p1 ph1
  go=2 ph31 cpd2:f2
  30m do:f2 mc #0 to 2 F0(zd)
  30m LOCKH_OFF
exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;ns: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2

;$Id:$
