;zgpg
;avance-version (12/01/11)
;1D sequence with power-gated decoupling
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>


"d11=30m"


"DELTA=d1-100m"


"acqt0=-p1*2/3.1416"


1 ze
  d11 pl12:f2
2 30m do:f2
  10u pl13:f2
  d11 cpd2:f2
  DELTA
  4u do:f2
  10u pl12:f2
  100m cpd2:f2
  p1 ph1
  go=2 ph31
  30m do:f2 pl13:f2 mc #0 to 2 F0(zd)
exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl13: f2 channel - power level for second CPD/BB decoupling
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;ns: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence



;$Id:$
